// Cavity_TEM_Light_v1_2_0_R10_DEV01.ijm
// Prompt-1 R10-P0 closed-contract engineering candidate.
// TECHNICAL_PREVIEW=true; scientific_validation=false; functional_release=false.
// The R9 source remains a separate byte-identical baseline file.
// Combined and user-installable Fiji toolset for Cavity TEM Studio v5.6.0.
// Install ONLY this file. Files under developer_sources are internal modules.
// R9 corrects the mouse-wheel routing observed during the guided R8 audit.
// In Add mode, Alt+wheel changes the live cursor-circle diameter immediately;
// in Select mode it changes the selected cavity. Ctrl+Alt remains an accepted
// alias, but can no longer fall through to image zoom. A high-priority wheel
// router delegates every unhandled event to FIJI, preserving normal navigation.
// The project schema remains 1 and R9 opens immutable revisions created by R5-R8.

// Cavity_ROI_Toolset_v8_3_0.ijm - Guided tabbed interface and ProjectAware workflow
// Fiji/ImageJ toolset for manual and traceable TEM cavity measurements in
// individual micrographs and TEM collages.
//
// v8.0.6 provides continuous drag-to-measure and click-to-add modes, fixes
// select/edit activation, repairs quantitative export, and makes Cancel/Esc a
// normal end-of-operation instead of an ImageJ "Macro canceled" exception.
// It also normalizes stored Windows paths and repairs common text mojibake.
// Version 8 priorities:
// - no F-key shortcuts;
// - separate add and select/edit modes, so close cavities are never blocked;
// - persistent project, scale, surface, panel, mask and feature metadata;
// - one calibrated physical scale; visual scale overlays are optional;
// - straight, segmented or freehand surface with signed perpendicular depth;
// - stable cavity identifiers and recalculation from the current ROI geometry;
// - duplicate warnings without preventing genuine overlaps or alignments;
// - grain-boundary, dislocation, panel, analysis-mask and exclusion layers;
// - post-identification grouping by depth bands and quantitative export.
//
// Install with Plugins > Macros > Install..., or place in Fiji.app/macros/toolsets/.
// User-facing strings are intentionally ASCII-only for compatibility with
// ImageJ installations that do not read macro files as UTF-8.

requires("1.54e");

// -----------------------------------------------------------------------------
// Global state
// -----------------------------------------------------------------------------

var macroVersion = "Cavity-TEM-Light-v1.2.0-R10-DEV01_derived-from-v1.1.1-R9";
var sessionMetadataName = "CAVITY_SESSION_METADATA";
var legacyMetadataName = "BUBBLE_SESSION_METADATA";
var scaleReferenceName = "SCALE_REFERENCE";
var scaleLabelName = "SCALE_REFERENCE_LABEL";
var surfaceReferenceName = "SURFACE_REFERENCE";

// -----------------------------------------------------------------------------
// Cavity TEM Light: project and independent-image state
// -----------------------------------------------------------------------------
var lightSchemaVersion = "1";
var lightReleaseVersion = "1.2.0-R10-DEV01";
var lightProjectLoaded = 0;
var lightProjectRoot = "";
var lightProjectFile = "";
var lightProjectId = "";
var lightProjectName = "";
var lightProjectUid = "";
var lightImageId = "";
var lightImageDir = "";
var lightSourcePath = "";
var lightSourceStoredPath = "";
var lightSourceSha256 = "";
var lightCopySource = 0;
var lightImageMode = "without_surface";
var lightThicknessNm = 0;
var lightThicknessUncertaintyNm = 0;
var lightThicknessMethod = "not_provided";
var lightThicknessNotes = "";
var lightOriginalScaleNmX = NaN;
var lightOriginalScaleNmY = NaN;
var lightOriginalScaleUnit = "";
var lightScaleOrigin = "bioformats_metadata";
var lightScaleConfirmed = 0;
var lightUseWholeImage = 0;
var lightIncludeUncertain = 0;
var lightCurrentRevision = "";
var lightCurrentRunId = "";
var lightHistogramBinNm = 1.0;
var lightLastExportDir = "";
var lightRegistryFileName = "images.tsv";
var lightProjectFileName = "cavity_light_project.tsv";
var lightImageMetadataFileName = "image_metadata.tsv";
var lightCurrentRevisionFileName = "current_revision.txt";
var lightValidationState = "TECHNICAL_PREVIEW_PROMPT1_NOT_SCIENTIFICALLY_VALIDATED";
var lightLastDepthBinNm = 1.0;
var lightLastDepthAreasNm2 = newArray(0);
var lightLastValidPixels = 0;
var lightStatMean = NaN;
var lightStatStd = NaN;
var lightStatMedian = NaN;
var lightStatQ25 = NaN;
var lightStatQ75 = NaN;
var lightStatMin = NaN;
var lightStatMax = NaN;
var lightStatsStatus = "NOT_RUN";
var lightStatsErrorCode = "";
var lightFeatureDistanceBinNm = 10.0;
var lightLastGbDistanceAreasNm2 = newArray(0);
var lightLastDislocationDistanceAreasNm2 = newArray(0);
var lightLastInterfaceDistanceAreasNm2 = newArray(0);
var lightProjectDescriptorType = "cavity_tem_light_project";
var lightImageDescriptorType = "cavity_tem_light_image";

// Prompt-1 Fiji facade state. IDs are stamped onto ImagePlus/ROI properties;
// deferred work never relies on these mutable IJM globals as its authority.
var p1RuntimeVersion = "CTL_P1_FIJI_RUNTIME_V1";
var p1RuntimeBuildIdentity = "CTL_P1_FIJI_RUNTIME_BUILD_20260821_11";
var p1PixelHashMethod = "CTL_MASTER_PIXEL_SHA256_V1";
var p1OperationContextSchema = "CTL_OPERATION_CONTEXT_V1";
var p1BridgeRequestSchema = "CTL_IJM_BRIDGE_REQUEST_V1";
var p1BridgeResponseSchema = "CTL_IJM_BRIDGE_RESPONSE_V1";
var p1RuntimeConfigSchema = "CTL_P1_RUNTIME_CONFIG_V2";
var p1RuntimeManifestSchema = "CTL_P1_RUNTIME_MANIFEST_V1";
var p1RuntimeInventoryProfile = "CTL_P1_RUNTIME_CLOSED_INVENTORY_V1";
var p1RuntimeManifestName = "CTL_P1_RUNTIME_MANIFEST.json";
var p1RuntimeManifestSha256 = "39ae3459727f9a4fcd7f282951e02792471abd7ca7c38f3ceabdbcb26fb7433d";
var p1AnalysisSessionId = "";
var p1AnalysisSessionUid = "";
var p1WorkingStateId = "";
var p1ImageUid = "";
var p1MasterPixelSha256 = "";
var p1MasterPixelHashStatus = "NOT_VERIFIED";
var p1ExpectedPixelFreezeRoot = "";
var p1ExpectedPixelBindingStatus = "NOT_BOUND";
var p1GenerationToken = 1;
var p1SelectionRevision = 0;
var p1LastOperationContextJson = "";
var p1LoadRevisionRelativePath = "";
var p1LoadWorkingStateId = "";

// R7 prepared-state and area caches. The fingerprint contains only primary
// geometry/configuration inputs, never derived properties such as duplicate
// status. This allows validation, revision save and export to reuse a verified
// state when nothing scientific changed, while direct ROI edits are still
// detected before any quantitative operation.
var lightPreparedFingerprint = "";
var lightPreparedAtMs = 0;
var lightLastPreparationDurationMs = 0;
var lightLastPreparationReused = 0;
var lightPreparationRuns = 0;
var lightPreparationCacheHits = 0;
var lightAreaFingerprint = "";
var lightAreaComputationMode = "not_calculated";
var lightAreaComputationDurationMs = 0;
var lightCavityContextActive = 0;
var lightCtxValid = newArray(0);
var lightCtxEdgeMask = newArray(0);
var lightCtxReason = newArray(0);
var lightCtxDistanceGbNm = newArray(0);
var lightCtxDistanceDislocationNm = newArray(0);
var lightCtxDistanceInterfaceNm = newArray(0);

// R9 interactive editing. The resize step is a UI preference (nm per wheel
// notch), not a scientific result. Stable cavity IDs are never renumbered.
var lightInteractiveMode = "select";
var lightInteractivePreviewEnabled = 1;
var lightInteractiveResizeStepNm = 0.010;
var lightInteractiveResizeMinNm = 0.001;
var lightInteractiveResizeMaxNm = 0.200;
var lightInteractiveDebounceMs = 350;
var lightInteractiveControllerStatus = "not_installed";
var lightInteractivePreviewName = "__CTL_R8_CURSOR_PREVIEW__";
var lightLastInteractiveEditId = "";
var lightLastInteractiveEditKind = "";
var lightLastInteractiveEditDiameterNm = NaN;
var lightCachedCavityCount = -1;
var lightLastIdAuditErrors = 0;
var lightLastIdAuditDuplicateIds = 0;
var lightObjectCountCavities = 0;
var lightObjectCountMasks = 0;
var lightObjectCountExclusions = 0;
var lightObjectCountGrainBoundaries = 0;
var lightObjectCountDislocations = 0;
var lightObjectCountInterfaces = 0;
var lightObjectCountSurfaces = 0;
var lightObjectCountDuplicateSuspects = 0;


// Project metadata
var projectConfigured = 0;
var sampleName = "";
var experimentalCondition = "";
var montageId = "";
var sourceFirst = "";
var sourceLast = "";
var sourceImageList = "";
var microscopeVoltage = "";
var specimenTemperature = "";
var operatorName = "";
var projectNotes = "";
var imageFileName = "";
var imageDirectory = "";
var imageChecksum = "";
var sessionRoiPath = "";

// ProjectAware bridge with Cavity TEM Studio / Python-prepared projects
var projectAwareActive = 0;
var projectAwareProjectDir = "";
var projectAwareSessionsDir = "";
var projectAwareDerivedDir = "";
var projectAwareViewsDir = "";
var projectAwareProjectFieldsCsv = "";
var projectAwareMetadataJson = "";
var projectAwareLayoutCheckCsv = "";
var projectAwareMontageBuildLogCsv = "";
var projectAwareResultsCsv = "";
var projectAwareMasterTif = "";
var projectAwareCurrentAnalysisImagePath = "";
var projectAwareCurrentAnalysisImageRole = "";
var projectAwareCurrentAnalysisImageName = "";
var projectAwareProjectUid = "";
var projectAwarePanelCount = "";
var projectAwarePixelWidth = "";
var projectAwarePixelHeight = "";
var projectAwarePixelUnit = "";
var projectAwareSourceEndExclusive = "";
var projectAwareLastExportDir = "";

// Calibration and geometry
var scaleDefined = 0;
var scaleKnownNm = 0;
var nmPerPixelX = 1;
var nmPerPixelY = 1;
var unitFactorNm = 1;
var currentUnit = "pixel";

var surfaceDefined = 0;
var surfaceSideDefined = 0;
var surfaceMaterialX = NaN;
var surfaceMaterialY = NaN;
var surfaceMaterialSign = 1;
var surfaceX = newArray(0);
var surfaceY = newArray(0);

// Last surface calculation. computeSurfaceMetrics() updates these values.
var surfaceLastDistanceNm = NaN;
var surfaceLastSignedDistanceNm = NaN;
var surfaceLastArcNm = NaN;
var surfaceLastNearestXpx = NaN;
var surfaceLastNearestYpx = NaN;
var surfaceLastTangentAngleDeg = NaN;

// Cavity measurement and grouping
var activeDiameterNm = 0;
var bandNm = 50;
var bandCount = 20;
var excludeNegativeDepth = 1;
var usePanelsAsMask = 0;
var displayMode = "type"; // type, band or quality
var PI_VAL = 3.141592653589793;

// Stable serial counters
var cavityCounter = 0;
var panelCounter = 0;
var maskCounter = 0;
var exclusionCounter = 0;
var grainBoundaryCounter = 0;
var dislocationCounter = 0;
var loopCounter = 0;
var interfaceCounter = 0;

// Duplicate detection
var duplicateCenterTolPx = 2.0;
var duplicateRelativeTol = 0.20;
var duplicateDiameterTolFraction = 0.30;
var selectionTolerancePx = 5.0;
var pointValidityReason = "";
var panelLastId = "";
var panelLastSource = "";
var panelLastMatchCount = 0;

// Area sampling for band denominators
var areaSamplingTarget = 2000000;
var lastAreaSamplingStepPx = NaN;
var lastValidAreaNm2 = NaN;
var lastBandAreasNm2 = newArray(0);

// Quantitative export coverage. Globals avoid ambiguous mixed text/numeric
// return values in IJM when no or only one field is present after split().
var coverageMaxBand = -1;
var coverageUnbanded = 0;
var coverageIncluded = 0;

// Appearance
var showRoiLabels = 1;
var fillCavities = 1;
var fillAlpha = 70;
var fillAlphaHex = "46";
var roiStrokeWidth = 1;
var activeStrokeColor = "#ff3333";
var activeFillColor = "#46ff3333";
var activeCavityClass = "confirmed";
var activeCavityClassLabel = "Confirmada";
var activeCavityConfidence = "high";
var autoOpenBrightnessContrast = 1;
var featureToolPreset = "";
var missingMacroToolWarningShown = 0;

// One-level undo for add/delete operations
var undoKind = "";
var undoObjectId = "";
var undoDeletedName = "";
var undoAvailable = 0;

// Navigation and view preservation
var keepWindowSize = 1;
var lockedWinW = 0;
var lockedWinH = 0;
var fixedNavigation = 1;
var panFraction = 0.75;
var keyPanFraction = 0.30;
var wheelPanFraction = 0.18;
var zoomStep = 1.5;
var restoreViewAfterRoi = 1;
var viewSnapshotValid = 0;
var viewSnapX = 0;
var viewSnapY = 0;
var viewSnapW = 0;
var viewSnapH = 0;
var viewSnapWinX = 0;
var viewSnapWinY = 0;
var viewSnapWinW = 0;
var viewSnapWinH = 0;

// -----------------------------------------------------------------------------
// Macro commands. No F-key shortcuts are used.
// -----------------------------------------------------------------------------

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// Toolbar tools
// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// -----------------------------------------------------------------------------
// Control panel and status
// -----------------------------------------------------------------------------

function showControlPanel() { lightShowPanel(); }


function refreshControlPanelStatus() { lightRefreshPanel(); }


function panelStatusLine1() {
    s = sampleName;
    if (s == "") s = "(muestra sin definir)";
    m = montageId;
    if (m == "") m = "(montaje sin definir)";
    r = sourceFirst;
    if (sourceLast != "") r = r + " - " + sourceLast;
    if (r == "") r = "(origen sin definir)";
    return "Muestra: " + s + " | Montaje: " + m + " | Imagenes: " + r;
}

function panelStatusLine2() {
    sc = "sin escala";
    if (updateScaleMaybe()) sc = d2s(nmPerPixelX, 6) + " nm/px";
    if (scaleDefined) sc = sc + " (referencia visible)";
    sf = "sin superficie";
    if (surfaceDefined) {
        sf = "superficie definida";
        if (surfaceSideDefined) sf = sf + " + lado material";
        else sf = sf + " (distancia sin signo)";
    }
    d = "sin diametro activo";
    if (activeDiameterNm > 0) d = d2s(activeDiameterNm, 3) + " nm";
    modeLabel = currentInteractionModeLabel();
    return "Escala: " + sc + " | " + sf + " | Diametro activo: " + d + " | Modo: " + modeLabel;
}

function panelStatusLine3() {
    countsReady = lightRefreshObjectCounts();
    if (countsReady == 0) {
        lightObjectCountCavities = 0;
        lightObjectCountMasks = 0;
        lightObjectCountExclusions = 0;
        lightObjectCountDuplicateSuspects = 0;
    }
    pa = "";
    if (projectAwareActive) pa = " | Proyecto: ProjectAware | Imagen: " + projectAwareCurrentAnalysisImageRole;
    return "Cavidades: " + lightObjectCountCavities + " | Tipo activo: " + activeCavityClassLabel + " | Mascaras: " + lightObjectCountMasks + " | Exclusiones: " + lightObjectCountExclusions + " | Duplicados sospechosos: " + lightObjectCountDuplicateSuspects + " | Color: " + displayMode + pa;
}

// -----------------------------------------------------------------------------
// Project metadata, session persistence and migration
// -----------------------------------------------------------------------------

function editProjectMetadata() {
    if (nImages() <= 0) exit("Abre primero la imagen o collage TEM.");
    refreshImageIdentity();

    if (montageId == "") montageId = stripExtension(getTitle());
    if (operatorName == "") operatorName = getInfo("user.name");

    Dialog.create("Proyecto y trazabilidad");
    Dialog.addString("Nombre de la muestra:", sampleName, 35);
    Dialog.addString("Condicion experimental:", experimentalCondition, 35);
    Dialog.addString("Identificador del collage/montaje:", montageId, 35);
    Dialog.addString("Primera imagen DM3:", sourceFirst, 25);
    Dialog.addString("Ultima imagen DM3:", sourceLast, 25);
    Dialog.addString("Lista completa (separada por ;):", sourceImageList, 55);
    Dialog.addString("Tension del microscopio:", microscopeVoltage, 20);
    Dialog.addString("Temperatura/condicion de muestra:", specimenTemperature, 20);
    Dialog.addString("Operador:", operatorName, 25);
    Dialog.addString("Notas:", projectNotes, 55);
    Dialog.show();

    sampleName = Dialog.getString();
    experimentalCondition = Dialog.getString();
    montageId = Dialog.getString();
    sourceFirst = Dialog.getString();
    sourceLast = Dialog.getString();
    sourceImageList = Dialog.getString();
    microscopeVoltage = Dialog.getString();
    specimenTemperature = Dialog.getString();
    operatorName = Dialog.getString();
    projectNotes = Dialog.getString();

    projectConfigured = 0;
    if (sampleName != "" && montageId != "") projectConfigured = 1;
    updateSessionMetadataRoi();
    refreshControlPanelStatus();
    showStatus("Metadatos del proyecto actualizados.");
}

function refreshImageIdentity() {
    detectedFileName = getInfo("image.filename");
    detectedDirectory = getInfo("image.directory");
    if (detectedFileName == "") detectedFileName = getTitle();
    imageFileName = detectedFileName;
    imageDirectory = normalizeStoredPath(detectedDirectory);
    imageChecksum = "";
    fullPath = "";
    if (imageFileName != "" && imageDirectory != "") fullPath = imageDirectory + imageFileName;
    if (fullPath != "" && File.exists(fullPath)) {
        imageChecksum = IJ.checksum("SHA-256 file", fullPath);
        if (imageChecksum == "0") imageChecksum = "";
    }
}

function openOrLoadSessionRois() { lightLoadRevision(); return 1; }


function saveSessionRois() { lightSaveRevision(); return 1; }


function loadSessionFromRois(verbose) {
    if (nImages() <= 0) return 0;
    run("ROI Manager..."); n = roiManager("count"); if (n == 0) return 0;
    snapshotCurrentView(); loaded = 0; idx = findMetadataIndex();
    if (idx < -1) { showStatus("CTL P1 METADATA_INVENTORY_AMBIGUOUS: sesion no cargada."); return 0; }
    if (idx >= 0) {
        if (!p1SelectMetadataIndexExact(idx)) { showStatus("CTL P1 METADATA_SELECTION_FAILED: sesion no cargada."); return 0; }
        loaded = readMetadataFromSelectedRoi();
    }
    if (loadScaleReferenceFromRois()) { loaded = 1; rebuildScaleLabelFromReference(0); }
    if (loadSurfaceReferenceFromRois()) loaded = 1;
    if (!updateScaleMaybe()) { if (inferLegacyScaleFromCavities()) loaded = 1; }
    ensureObjectIds(); recalculateCounters(); syncAllObjects(0); restyleAllRois(); showAllRois(); restoreViewSnapshot(); installInteractionListeners(0);lightInteractivePushState("select");
    if (loaded) updateSessionMetadataRoi();
    if (verbose && loaded) {
        msg = "Sesion Cavity TEM Light restaurada.\n\nImagen: " + lightImageId + "\nMuestra: " + sampleName + "\n";
        if (updateScaleMaybe()) msg = msg + "Escala: " + d2s(nmPerPixelX,8) + " x " + d2s(nmPerPixelY,8) + " nm/px\n";
        msg = msg + "Cavidades: " + countTypeFast("cavity") + "\nAreas validas: " + countTypeFast("analysis_mask") + "; exclusiones: " + countTypeFast("exclusion") + ".";
        showMessage("Sesion Light restaurada", msg);
    }
    lightRefreshPanel(); return loaded;
}
function readMetadataFromSelectedRoi() {
    mv=Roi.getProperty("Macro_version");candidateProjectRoot=normalizeStoredPath(propString("Light_project_root",lightProjectRoot));candidateProjectId=propString("Light_project_id",lightProjectId);candidateProjectName=propString("Light_project_name",lightProjectName);candidateProjectUid=propString("Light_project_uid",lightProjectUid);candidateImageId=propString("Light_image_id",propString("Montage_id",lightImageId));candidateImageDir=normalizeStoredPath(propString("Light_image_dir",lightImageDir));
    descriptor=lightFindCanonicalProjectFile(candidateProjectRoot);if(descriptor=="")descriptor=lightFindCanonicalProjectFile(candidateImageDir);if(descriptor==""&&lightProjectFile!=""&&lightProjectDescriptorValid(lightProjectFile,candidateProjectId,candidateProjectUid)==1)descriptor=lightProjectFile;
    if(lightProjectDescriptorValid(descriptor,candidateProjectId,candidateProjectUid)==0){showMessage("Sesion ROI rechazada","Las ROIs no pueden vincularse a un descriptor canonico con el mismo Project ID y Project UID.\n\nNo se modificara el contexto del proyecto.");return 0;}
    lightProjectFile=normalizeStoredPath(descriptor);lightProjectRoot=lightNormalizeDir(File.getDirectory(descriptor));lightProjectId=lightKvRead(descriptor,"project_id",candidateProjectId);lightProjectName=lightKvRead(descriptor,"project_name",candidateProjectName);lightProjectUid=lightKvRead(descriptor,"project_uid",candidateProjectUid);
    lightImageId=candidateImageId;expectedImageDir=lightNormalizeDir(lightJoin(lightJoin(lightProjectRoot,"images"),lightImageId));lightImageDir=expectedImageDir;
    lightSourcePath=normalizeStoredPath(propString("Light_source_path",lightSourcePath));lightSourceStoredPath=normalizeStoredPath(propString("Light_source_stored_path",lightSourceStoredPath));lightSourceSha256=propString("Light_source_sha256",propString("Image_checksum_sha256",lightSourceSha256));lightCopySource=round(propNumber("Light_copy_source",lightCopySource));lightImageMode=propString("Light_image_mode",lightImageMode);lightThicknessNm=propNumber("Light_thickness_nm",lightThicknessNm);lightThicknessUncertaintyNm=propNumber("Light_thickness_uncertainty_nm",lightThicknessUncertaintyNm);lightThicknessMethod=propString("Light_thickness_method",lightThicknessMethod);lightThicknessNotes=propString("Light_thickness_notes",lightThicknessNotes);lightOriginalScaleNmX=propNumber("Light_original_scale_nm_per_px_x",lightOriginalScaleNmX);lightOriginalScaleNmY=propNumber("Light_original_scale_nm_per_px_y",lightOriginalScaleNmY);lightOriginalScaleUnit=propString("Light_original_scale_unit",lightOriginalScaleUnit);lightScaleOrigin=propString("Light_scale_origin",lightScaleOrigin);lightScaleConfirmed=round(propNumber("Light_scale_confirmed",lightScaleConfirmed));lightUseWholeImage=round(propNumber("Light_use_whole_image",lightUseWholeImage));lightIncludeUncertain=round(propNumber("Light_include_uncertain",lightIncludeUncertain));lightHistogramBinNm=propNumber("Light_histogram_bin_nm",lightHistogramBinNm);lightFeatureDistanceBinNm=propNumber("Light_feature_distance_bin_nm",lightFeatureDistanceBinNm);lightCurrentRevision=propString("Light_current_revision",lightCurrentRevision);
    sampleName=lightKvRead(descriptor,"sample_name",repairCommonTextEncoding(propString("Sample_name",sampleName)));experimentalCondition=lightKvRead(descriptor,"experimental_condition",repairCommonTextEncoding(propString("Experimental_condition",experimentalCondition)));microscopeVoltage=repairCommonTextEncoding(propString("Microscope_voltage",microscopeVoltage));specimenTemperature=repairCommonTextEncoding(propString("Specimen_temperature",specimenTemperature));operatorName=lightKvRead(descriptor,"operator_name",repairCommonTextEncoding(propString("Operator_name",operatorName)));projectNotes=lightKvRead(descriptor,"project_notes",repairCommonTextEncoding(propString("Project_notes",projectNotes)));imageFileName=repairCommonTextEncoding(propString("Image_filename",imageFileName));imageDirectory=normalizeStoredPath(repairCommonTextEncoding(propString("Image_directory",imageDirectory)));montageId=lightImageId;sourceFirst=imageFileName;sourceLast=imageFileName;sourceImageList=imageFileName;
    sx=propNumber("Scale_nm_per_px_x",0);sy=propNumber("Scale_nm_per_px_y",0);if(sx>0&&sy>0){setVoxelSize(sx,sy,1,"nm");updateScaleMaybe();}scaleKnownNm=propNumber("Scale_known_length_nm",scaleKnownNm);scaleDefined=round(propNumber("Scale_defined",scaleDefined));surfaceDefined=round(propNumber("Surface_defined",surfaceDefined));surfaceSideDefined=round(propNumber("Surface_side_defined",surfaceSideDefined));surfaceMaterialX=propNumber("Surface_material_x_px",surfaceMaterialX);surfaceMaterialY=propNumber("Surface_material_y_px",surfaceMaterialY);surfaceMaterialSign=propNumber("Surface_material_sign",surfaceMaterialSign);if(surfaceMaterialSign==0||isNaN(surfaceMaterialSign))surfaceMaterialSign=1;activeDiameterNm=propNumber("Active_diameter_nm",activeDiameterNm);bandNm=propNumber("Band_width_nm",bandNm);bandCount=round(propNumber("Band_count",bandCount));excludeNegativeDepth=round(propNumber("Exclude_negative_depth",excludeNegativeDepth));usePanelsAsMask=0;displayMode=propString("Display_mode",displayMode);duplicateCenterTolPx=propNumber("Duplicate_center_tol_px",duplicateCenterTolPx);duplicateRelativeTol=propNumber("Duplicate_relative_tol",duplicateRelativeTol);duplicateDiameterTolFraction=propNumber("Duplicate_diameter_tol_fraction",duplicateDiameterTolFraction);selectionTolerancePx=propNumber("Selection_tolerance_px",selectionTolerancePx);areaSamplingTarget=round(propNumber("Area_sampling_target",areaSamplingTarget));storedExactLabelMode=propString("Light_exact_label_mode","");showRoiLabels=round(propNumber("Show_roi_labels",showRoiLabels));if(storedExactLabelMode=="")showRoiLabels=1;fillCavities=round(propNumber("Fill_cavities",fillCavities));fillAlpha=round(propNumber("Fill_alpha",fillAlpha));roiStrokeWidth=round(propNumber("ROI_stroke_width",roiStrokeWidth));lightInteractivePreviewEnabled=round(propNumber("Light_interactive_preview",lightInteractivePreviewEnabled));lightInteractiveResizeStepNm=propNumber("Light_resize_step_nm",lightInteractiveResizeStepNm);if(lightInteractiveResizeStepNm<lightInteractiveResizeMinNm)lightInteractiveResizeStepNm=lightInteractiveResizeMinNm;if(lightInteractiveResizeStepNm>lightInteractiveResizeMaxNm)lightInteractiveResizeStepNm=lightInteractiveResizeMaxNm;
    projectConfigured=0;if(lightProjectId!=""&&lightImageId!="")projectConfigured=1;lightProjectLoaded=projectConfigured;v4ProjectLoaded=0;savedW=round(propNumber("Image_width_px",getWidth()));savedH=round(propNumber("Image_height_px",getHeight()));if(savedW!=getWidth()||savedH!=getHeight())showMessage("Aviso de trazabilidad","Las ROIs pertenecen a "+savedW+" x "+savedH+" px y la imagen activa tiene "+getWidth()+" x "+getHeight()+" px.");loaded=0;if(mv!="")loaded=1;if(lightImageId!="")loaded=1;if(sx>0)loaded=1;return loaded;
}

function p1CaptureScientificSelectionToken() {
    if (nImages() <= 0) return "NEUTRAL";
    code = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,WM=Packages.ij.WindowManager,RE=Packages.ij.io.RoiEncoder,MD=Packages.java.security.MessageDigest,rm=RM.getInstance2(),imp=WM.getCurrentImage();";
    code = code + "function val(r,k){var v=r==null?null:r.getProperty(k);return v==null?'':String(v);}";
    code = code + "function norm(t){t=String(t||'');if(t=='analysis_area'||t=='mask')return 'analysis_mask';if(t=='surface')return 'surface_reference';return t;}";
    code = code + "function typ(r){var a=norm(val(r,'Type')),b=norm(val(r,'Object_type'));if(a!=''&&b!=''&&a!=b)return 'TYPE_CONFLICT';return a!=''?a:b;}";
    code = code + "function scientific(t){return t=='cavity'||t=='panel'||t=='analysis_mask'||t=='exclusion'||t=='dislocation_loop'||t=='grain_boundary'||t=='dislocation'||t=='interface'||t=='scale_reference'||t=='surface_reference';}";
    code = code + "function oid(r,t){var id='',primary='',alias='';if(t=='cavity'){primary=val(r,'Cavity_id');alias=val(r,'cavity_id');if(primary!=''&&alias!=''&&primary!=alias)return 'ID_CONFLICT';id=primary!=''?primary:alias;}else if(t=='panel'){id=val(r,'Panel_id');if(id=='')id=val(r,'Object_id');}else if(t=='analysis_mask'){id=val(r,'Mask_id');if(id=='')id=val(r,'Object_id');}else if(t=='exclusion'){id=val(r,'Exclusion_id');if(id=='')id=val(r,'Object_id');}else if(t=='dislocation_loop'){id=val(r,'Object_id');if(id=='')id=val(r,'Feature_id');}else{id=val(r,'Feature_id');if(id=='')id=val(r,'Object_id');}if(id=='')id=String(r.getName()||'');return id;}";
    code = code + "function sha(r){try{var b=RE.saveAsByteArray(r),d=MD.getInstance('SHA-256').digest(b),s='';for(var i=0;i<d.length;i++){var v=Number(d[i])&255;s+=(v<16?'0':'')+v.toString(16);}return s;}catch(ex){return '';}}";
    code = code + "function token(r){var t=typ(r);if(t=='TYPE_CONFLICT')return 'INVALID_SCIENTIFIC';if(r==null||!scientific(t))return '';var up=val(r,'Object_uuid'),ua=val(r,'object_uuid');if(up!=''&&ua!=''&&up!=ua)return 'INVALID_SCIENTIFIC';var u=up!=''?up:ua,id=oid(r,t),h=sha(r);if(id=='ID_CONFLICT'||u==''||id==''||h==''||u.indexOf('|')>=0||id.indexOf('|')>=0)return 'INVALID_SCIENTIFIC';return 'ROI|'+t+'|'+u+'|'+id+'|'+h;}";
    code = code + "var mi=rm==null?-1:rm.getSelectedIndex(),mr=mi>=0&&mi<rm.getCount()?rm.getRoi(mi):null,ir=imp==null?null:imp.getRoi(),mt=token(mr),it=token(ir);";
    code = code + "if(mt=='INVALID_SCIENTIFIC'||it=='INVALID_SCIENTIFIC'||(mt!='')!=(it!='')||(mt!=''&&it!=''&&mt!=it))return 'CONFLICT';return mt!=''?mt:'NEUTRAL';})()";
    return "" + eval("js", code);
}


function p1FindScientificSelectionIndex(objectType, objectUuid, objectIdValue, objectStateSha256) {
    if (objectType == "" || objectUuid == "" || objectIdValue == "" || objectStateSha256 == "") return -1;
    code = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,RE=Packages.ij.io.RoiEncoder,MD=Packages.java.security.MessageDigest,rm=RM.getInstance2(),wantedType='" + jsEscape(objectType) + "',wantedUuid='" + jsEscape(objectUuid) + "',wantedId='" + jsEscape(objectIdValue) + "',wantedSha='" + jsEscape(objectStateSha256) + "',found=-1;";
    code = code + "if(rm==null)return '-1';function val(r,k){var v=r==null?null:r.getProperty(k);return v==null?'':String(v);}";
    code = code + "function norm(t){t=String(t||'');if(t=='analysis_area'||t=='mask')return 'analysis_mask';if(t=='surface')return 'surface_reference';return t;}function typ(r){var a=norm(val(r,'Type')),b=norm(val(r,'Object_type'));if(a!=''&&b!=''&&a!=b)return 'TYPE_CONFLICT';return a!=''?a:b;}";
    code = code + "function oid(r,t){var id='',primary='',alias='';if(t=='cavity'){primary=val(r,'Cavity_id');alias=val(r,'cavity_id');if(primary!=''&&alias!=''&&primary!=alias)return 'ID_CONFLICT';id=primary!=''?primary:alias;}else if(t=='panel'){id=val(r,'Panel_id');if(id=='')id=val(r,'Object_id');}else if(t=='analysis_mask'){id=val(r,'Mask_id');if(id=='')id=val(r,'Object_id');}else if(t=='exclusion'){id=val(r,'Exclusion_id');if(id=='')id=val(r,'Object_id');}else if(t=='dislocation_loop'){id=val(r,'Object_id');if(id=='')id=val(r,'Feature_id');}else{id=val(r,'Feature_id');if(id=='')id=val(r,'Object_id');}if(id=='')id=String(r.getName()||'');return id;}";
    code = code + "function sha(r){try{var b=RE.saveAsByteArray(r),d=MD.getInstance('SHA-256').digest(b),s='';for(var i=0;i<d.length;i++){var v=Number(d[i])&255;s+=(v<16?'0':'')+v.toString(16);}return s;}catch(ex){return '';}}";
    code = code + "for(var i=0;i<rm.getCount();i++){var r=rm.getRoi(i),t=typ(r),up=val(r,'Object_uuid'),ua=val(r,'object_uuid');if(up!=''&&ua!=''&&up!=ua)return '-4';var u=up!=''?up:ua,id=oid(r,t);if(id=='ID_CONFLICT')return '-5';if(t==wantedType&&u==wantedUuid&&id==wantedId){if(found>=0)return '-2';if(sha(r)!=wantedSha)return '-3';found=i;}}return String(found);})()";
    result = "" + eval("js", code);
    idx = parseFloat(result);
    if (isNaN(idx)) return -1;
    return round(idx);
}


function p1RestoreScientificSelectionToken(selectionToken) {
    if (selectionToken == "NEUTRAL") {
        roiManager("deselect");
        Roi.selectNone;
        return 1;
    }
    if (startsWith(selectionToken, "CONFLICT")) return 0;
    parts = split(selectionToken, "|");
    if (parts.length != 5 || parts[0] != "ROI") return 0;
    idx = p1FindScientificSelectionIndex(parts[1], parts[2], parts[3], parts[4]);
    if (idx < 0) return 0;
    if (!safeRoiSelect(idx)) return 0;
    restoredType = currentRoiType();
    if (restoredType != parts[1]) return 0;
    restoredToken = p1CaptureScientificSelectionToken();
    if (restoredToken != selectionToken) return 0;
    return 1;
}


function p1SelectMetadataIndexExact(idx) {
    if (idx < 0 || !safeRoiSelect(idx)) return 0;
    code = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,WM=Packages.ij.WindowManager,RE=Packages.ij.io.RoiEncoder,MD=Packages.java.security.MessageDigest,rm=RM.getInstance2(),imp=WM.getCurrentImage(),idx=" + idx + ",sessionName='" + jsEscape(sessionMetadataName) + "',legacyName='" + jsEscape(legacyMetadataName) + "';";
    code = code + "if(rm==null||imp==null||idx<0||idx>=rm.getCount()||rm.getSelectedIndex()!=idx)return '0';function val(r,k){var v=r==null?null:r.getProperty(k);return v==null?'':String(v);}function sha(r){try{var b=RE.saveAsByteArray(r),d=MD.getInstance('SHA-256').digest(b),s='';for(var i=0;i<d.length;i++){var v=Number(d[i])&255;s+=(v<16?'0':'')+v.toString(16);}return s;}catch(ex){return '';}}";
    code = code + "var mr=rm.getRoi(idx),ir=imp.getRoi(),a=val(mr,'Type'),b=val(mr,'Object_type'),n=mr==null?'':String(mr.getName()||''),nameOK=n==sessionName||n==legacyName;if(mr==null||ir==null||(a!=''&&b!=''&&a!=b))return '0';var t=a!=''?a:b;if(!(t=='session_metadata'||(t==''&&nameOK)))return '0';var mh=sha(mr),ih=sha(ir);return mh!=''&&mh==ih?'1':'0';})()";
    bindingResult = "" + eval("js", code);
    if (bindingResult == "1") return 1;
    return 0;
}


function updateSessionMetadataRoi() {
    if (nImages() <= 0) return 0;
    run("ROI Manager...");
    selectionToken = p1CaptureScientificSelectionToken();
    if (startsWith(selectionToken, "CONFLICT")) {
        showStatus("CTL P1: seleccion cientifica divergente; session_metadata no se actualizo.");
        return 0;
    }
    refreshImageIdentityIfMissing();
    updateScaleMaybe();

    idx = findMetadataIndex();
    if (idx < -1) {
        if (!p1RestoreScientificSelectionToken(selectionToken)) {
            roiManager("deselect");
            Roi.selectNone;
        }
        showStatus("CTL P1 METADATA_INVENTORY_AMBIGUOUS: session_metadata no se actualizo.");
        return 0;
    }
    if (idx >= 0) {
        if (!p1SelectMetadataIndexExact(idx)) {
            if (!p1RestoreScientificSelectionToken(selectionToken)) {
                roiManager("deselect");
                Roi.selectNone;
            }
            showStatus("CTL P1 METADATA_SELECTION_FAILED: session_metadata no se modifico.");
            return 0;
        }
        Roi.setName(sessionMetadataName);
        Roi.setGroup(0);
        Roi.setFillColor("#00000000");
        Roi.setStrokeColor("#00000000");
        writeMetadataProperties();
        roiManager("update");
    } else {
        makeRectangle(0, 0, 1, 1);
        Roi.setName(sessionMetadataName);
        Roi.setGroup(0);
        Roi.setFillColor("#00000000");
        Roi.setStrokeColor("#00000000");
        writeMetadataProperties();
        roiManager("add");
    }
    if (!p1RestoreScientificSelectionToken(selectionToken)) {
        roiManager("deselect");
        Roi.selectNone;
        showStatus("CTL P1 METADATA_SELECTION_RESTORE_FAILED: seleccion neutral aplicada.");
        return 0;
    }
    return 1;
}

function writeMetadataProperties() {
    updateScaleMaybe();
    Roi.setProperty("Type", "session_metadata");
    Roi.setProperty("Macro_version", macroVersion);
    Roi.setProperty("Light_schema_version", lightSchemaVersion);
    Roi.setProperty("Light_release_version", lightReleaseVersion);
    Roi.setProperty("Light_validation_state", lightValidationState);
    Roi.setProperty("Light_project_root", lightProjectRoot);
    Roi.setProperty("Light_project_id", lightProjectId);
    Roi.setProperty("Light_project_name", lightProjectName);
    Roi.setProperty("Light_project_uid", lightProjectUid);
    Roi.setProperty("Light_image_id", lightImageId);
    Roi.setProperty("Light_image_dir", lightImageDir);
    Roi.setProperty("Light_source_path", lightSourcePath);
    Roi.setProperty("Light_source_stored_path", lightSourceStoredPath);
    Roi.setProperty("Light_source_sha256", lightSourceSha256);
    Roi.setProperty("Light_copy_source", d2s(lightCopySource,0));
    Roi.setProperty("Light_image_mode", lightImageMode);
    Roi.setProperty("Light_thickness_nm", d2s(lightThicknessNm,9));
    Roi.setProperty("Light_thickness_uncertainty_nm", d2s(lightThicknessUncertaintyNm,9));
    Roi.setProperty("Light_thickness_method", lightThicknessMethod);
    Roi.setProperty("Light_thickness_notes", lightThicknessNotes);
    Roi.setProperty("Light_original_scale_nm_per_px_x", d2s(lightOriginalScaleNmX,12));
    Roi.setProperty("Light_original_scale_nm_per_px_y", d2s(lightOriginalScaleNmY,12));
    Roi.setProperty("Light_original_scale_unit", lightOriginalScaleUnit);
    Roi.setProperty("Light_scale_origin", lightScaleOrigin);
    Roi.setProperty("Light_scale_confirmed", d2s(lightScaleConfirmed,0));
    Roi.setProperty("Light_use_whole_image", d2s(lightUseWholeImage,0));
    Roi.setProperty("Light_include_uncertain", d2s(lightIncludeUncertain,0));
    Roi.setProperty("Light_histogram_bin_nm", d2s(lightHistogramBinNm,9));
    Roi.setProperty("Light_feature_distance_bin_nm", d2s(lightFeatureDistanceBinNm,9));
    Roi.setProperty("Light_current_revision", lightCurrentRevision);
    Roi.setProperty("Sample_name", sampleName);
    Roi.setProperty("Experimental_condition", experimentalCondition);
    Roi.setProperty("Montage_id", lightImageId);
    Roi.setProperty("Source_first", imageFileName);
    Roi.setProperty("Source_last", imageFileName);
    Roi.setProperty("Source_image_list", imageFileName);
    Roi.setProperty("Microscope_voltage", microscopeVoltage);
    Roi.setProperty("Specimen_temperature", specimenTemperature);
    Roi.setProperty("Operator_name", operatorName);
    Roi.setProperty("Project_notes", projectNotes);
    Roi.setProperty("Image_title", getTitle());
    Roi.setProperty("Image_filename", imageFileName);
    Roi.setProperty("Image_directory", normalizeStoredPath(imageDirectory));
    Roi.setProperty("Image_checksum_sha256", lightSourceSha256);
    Roi.setProperty("Image_width_px", d2s(getWidth(),0));
    Roi.setProperty("Image_height_px", d2s(getHeight(),0));
    Roi.setProperty("Scale_defined", d2s(scaleDefined,0));
    Roi.setProperty("Scale_known_length_nm", d2s(scaleKnownNm,9));
    Roi.setProperty("Scale_nm_per_px_x", d2s(nmPerPixelX,12));
    Roi.setProperty("Scale_nm_per_px_y", d2s(nmPerPixelY,12));
    Roi.setProperty("Surface_defined", d2s(surfaceDefined,0));
    Roi.setProperty("Surface_side_defined", d2s(surfaceSideDefined,0));
    Roi.setProperty("Surface_material_x_px", d2s(surfaceMaterialX,6));
    Roi.setProperty("Surface_material_y_px", d2s(surfaceMaterialY,6));
    Roi.setProperty("Surface_material_sign", d2s(surfaceMaterialSign,0));
    Roi.setProperty("Active_diameter_nm", d2s(activeDiameterNm,9));
    Roi.setProperty("Band_width_nm", d2s(bandNm,9));
    Roi.setProperty("Band_count", d2s(bandCount,0));
    Roi.setProperty("Exclude_negative_depth", d2s(excludeNegativeDepth,0));
    Roi.setProperty("Use_panels_as_mask", "0");
    Roi.setProperty("Display_mode", displayMode);
    Roi.setProperty("Duplicate_center_tol_px", d2s(duplicateCenterTolPx,6));
    Roi.setProperty("Duplicate_relative_tol", d2s(duplicateRelativeTol,6));
    Roi.setProperty("Duplicate_diameter_tol_fraction", d2s(duplicateDiameterTolFraction,6));
    Roi.setProperty("Selection_tolerance_px", d2s(selectionTolerancePx,6));
    Roi.setProperty("Area_sampling_target", d2s(areaSamplingTarget,0));
    Roi.setProperty("Show_roi_labels", d2s(showRoiLabels,0));
    Roi.setProperty("Fill_cavities", d2s(fillCavities,0));
    Roi.setProperty("Fill_alpha", d2s(fillAlpha,0));
    Roi.setProperty("ROI_stroke_width", d2s(roiStrokeWidth,0));
    Roi.setProperty("Light_exact_label_mode", "roi_name_v1");
    Roi.setProperty("Light_interactive_preview", d2s(lightInteractivePreviewEnabled,0));
    Roi.setProperty("Light_resize_step_nm", d2s(lightInteractiveResizeStepNm,6));
    Roi.setProperty("Cavity_counter", d2s(cavityCounter,0));
    Roi.setProperty("Mask_counter", d2s(maskCounter,0));
    Roi.setProperty("Exclusion_counter", d2s(exclusionCounter,0));
    Roi.setProperty("Grain_boundary_counter", d2s(grainBoundaryCounter,0));
    Roi.setProperty("Dislocation_counter", d2s(dislocationCounter,0));
    Roi.setProperty("Interface_counter", d2s(interfaceCounter,0));
}


function setCommonObjectProperties() {
    updateScaleMaybe();
    Roi.setProperty("Session_macro_version", macroVersion);
    Roi.setProperty("Light_schema_version", lightSchemaVersion);
    Roi.setProperty("Project_id", lightProjectId);
    Roi.setProperty("Project_uid", lightProjectUid);
    Roi.setProperty("Image_id", lightImageId);
    Roi.setProperty("Image_mode", lightImageMode);
    Roi.setProperty("Source_sha256", lightSourceSha256);
    Roi.setProperty("Revision_id", lightCurrentRevision);
    Roi.setProperty("Sample_name", sampleName);
    Roi.setProperty("Experimental_condition", experimentalCondition);
    Roi.setProperty("Montage_id", lightImageId);
    Roi.setProperty("Image_title", getTitle());
    Roi.setProperty("Image_width_px", d2s(getWidth(),0));
    Roi.setProperty("Image_height_px", d2s(getHeight(),0));
    Roi.setProperty("Session_scale_nm_per_px_x", d2s(nmPerPixelX,12));
    Roi.setProperty("Session_scale_nm_per_px_y", d2s(nmPerPixelY,12));
    Roi.setProperty("Session_scale_unit", "nm");
    Roi.setProperty("Foil_thickness_nm", d2s(lightThicknessNm,9));
    p1StampCurrentRoiIdentity();
}


function findMetadataIndex() {
    code = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),sessionName='" + jsEscape(sessionMetadataName) + "',legacyName='" + jsEscape(legacyMetadataName) + "';";
    code = code + "if(rm==null)return '-1';var found=-1;for(var i=0;i<rm.getCount();i++){var r=rm.getRoi(i),n=r==null?'':String(r.getName()||''),a=r==null?'':String(r.getProperty('Type')||''),b=r==null?'':String(r.getProperty('Object_type')||''),nameOK=n==sessionName||n==legacyName;if(a!=''&&b!=''&&a!=b)return '-3';var t=a!=''?a:b;if(nameOK&&t!=''&&t!='session_metadata')return '-3';if(t=='session_metadata'||(t==''&&nameOK)){if(found>=0)return '-2';found=i;}}return String(found);})()";
    result = "" + eval("js", code);
    idx = parseFloat(result);
    if (isNaN(idx)) return -1;
    return round(idx);
}

function refreshImageIdentityIfMissing() {
    currentFileName = getInfo("image.filename");
    currentImageDirectory = getInfo("image.directory");
    storedPathValid = 0;
    if (imageFileName != "" && imageDirectory != "") {
        normalizedImageDirectory = normalizeStoredPath(imageDirectory);
        storedFullPath = normalizedImageDirectory + imageFileName;
        if (File.exists(storedFullPath)) storedPathValid = 1;
    }
    if (!storedPathValid || imageFileName == "" || imageDirectory == "" || looksLikeCollapsedWindowsPath(imageDirectory)) {
        if (currentFileName != "" || currentImageDirectory != "") refreshImageIdentity();
        else if (imageFileName == "") imageFileName = getTitle();
    }
}

function inferLegacyScaleFromCavities() {
    n = roiManager("count");
    sxSum = 0;
    sySum = 0;
    c = 0;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        if (currentRoiIsCavity()) {
            d = propNumber("Diameter_nm", -1);
            Roi.getFloatBounds(x, y, w, h);
            if (d > 0 && w > 0 && h > 0) {
                sxSum = sxSum + d/w;
                sySum = sySum + d/h;
                c++;
            }
        }
    }
    if (c > 0) {
        setVoxelSize(sxSum/c, sySum/c, 1, "nm");
        updateScaleMaybe();
        return 1;
    }
    return 0;
}

function ensureObjectIds() {
    if (nImages() <= 0) return;
    run("ROI Manager...");
    recalculateCounters();
    n = roiManager("count");
    changed = 0;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        name = Roi.getName;
        storedType = Roi.getProperty("Type");
        type = normalizedType(name, storedType);
        if (type == "cavity") {
            id = Roi.getProperty("Cavity_id");
            if (id == "") {
                cavityCounter++;
                id = "CAV_" + IJ.pad(cavityCounter, 6);
                Roi.setProperty("Cavity_id", id);
                Roi.setProperty("Cavity_serial", d2s(cavityCounter, 0));
                Roi.setProperty("Legacy_name", name);
                Roi.setProperty("Type", "cavity");
                Roi.setName(id);
                roiManager("update");
                changed++;
            }
        } else if (type == "panel") {
            id = Roi.getProperty("Panel_id");
            if (id == "") {
                panelCounter++;
                id = "PANEL_" + IJ.pad(panelCounter, 3);
                Roi.setProperty("Panel_id", id);
                Roi.setProperty("Panel_order", d2s(panelCounter, 0));
                Roi.setProperty("Type", "panel");
                Roi.setName(id);
                roiManager("update");
                changed++;
            }
        } else if (type == "analysis_mask") {
            id = Roi.getProperty("Mask_id");
            if (id == "") {
                maskCounter++;
                id = "MASK_" + IJ.pad(maskCounter, 3);
                Roi.setProperty("Mask_id", id);
                Roi.setProperty("Type", "analysis_mask");
                Roi.setName(id);
                roiManager("update");
                changed++;
            }
        } else if (type == "exclusion") {
            id = Roi.getProperty("Exclusion_id");
            if (id == "") {
                exclusionCounter++;
                id = "EXCL_" + IJ.pad(exclusionCounter, 3);
                Roi.setProperty("Exclusion_id", id);
                Roi.setProperty("Type", "exclusion");
                Roi.setName(id);
                roiManager("update");
                changed++;
            }
        } else if (type == "grain_boundary") {
            id = Roi.getProperty("Feature_id");
            if (id == "") {
                grainBoundaryCounter++;
                id = "GB_" + IJ.pad(grainBoundaryCounter, 4);
                Roi.setProperty("Feature_id", id);
                Roi.setProperty("Type", "grain_boundary");
                Roi.setName(id);
                roiManager("update");
                changed++;
            }
        } else if (type == "dislocation") {
            id = Roi.getProperty("Feature_id");
            if (id == "") {
                dislocationCounter++;
                id = "DISL_" + IJ.pad(dislocationCounter, 4);
                Roi.setProperty("Feature_id", id);
                Roi.setProperty("Type", "dislocation");
                Roi.setName(id);
                roiManager("update");
                changed++;
            }
        } else if (type == "dislocation_loop") {
            id = Roi.getProperty("Object_id");
            if (id == "") id = Roi.getProperty("Feature_id");
            if (id == "" || !startsWith(id, "LOOP_")) {
                loopCounter++;
                id = "LOOP_" + IJ.pad(loopCounter, 6);
                Roi.setProperty("Legacy_name", name);
            }
            loopCounter = max2(loopCounter, serialFromId(id));
            Roi.setProperty("Object_id", id);
            Roi.setProperty("Feature_id", id);
            Roi.setProperty("Type", "dislocation_loop");
            Roi.setProperty("Object_type", "dislocation_loop");
            subtype = Roi.getProperty("Object_subtype");
            if (subtype == "") subtype = v4LoopSubtypeForCurrentSelection();
            Roi.setProperty("Object_subtype", subtype);
            visibleName = v4VisibleLoopName(id, subtype);
            if (name != visibleName) Roi.setName(visibleName);
            roiManager("update");
            changed++;
        } else if (type == "interface") {
            id = Roi.getProperty("Feature_id");
            if (id == "") {
                interfaceCounter++;
                id = "INT_" + IJ.pad(interfaceCounter, 4);
                Roi.setProperty("Feature_id", id);
                Roi.setProperty("Type", "interface");
                Roi.setName(id);
                roiManager("update");
                changed++;
            }
        }
    }
    if (changed > 0) updateSessionMetadataRoi();
}

function recalculateCounters() {
    cavityCounter = 0;
    panelCounter = 0;
    maskCounter = 0;
    exclusionCounter = 0;
    grainBoundaryCounter = 0;
    dislocationCounter = 0;
    loopCounter = 0;
    interfaceCounter = 0;
    activeCavityCount = 0;
    n = roiManager("count");
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        type = currentRoiType();
        cavityIdValue = Roi.getProperty("Cavity_id");
        panelIdValue = Roi.getProperty("Panel_id");
        maskIdValue = Roi.getProperty("Mask_id");
        exclusionIdValue = Roi.getProperty("Exclusion_id");
        featureIdValue = Roi.getProperty("Feature_id");
        cavityFallback = serialFromId(cavityIdValue);
        panelFallback = serialFromId(panelIdValue);
        if (type == "cavity") { cavityCounter = max2(cavityCounter, round(propNumber("Cavity_serial", cavityFallback))); activeCavityCount++; }
        if (type == "panel") panelCounter = max2(panelCounter, round(propNumber("Panel_order", panelFallback)));
        if (type == "analysis_mask") maskCounter = max2(maskCounter, serialFromId(maskIdValue));
        if (type == "exclusion") exclusionCounter = max2(exclusionCounter, serialFromId(exclusionIdValue));
        if (type == "grain_boundary") grainBoundaryCounter = max2(grainBoundaryCounter, serialFromId(featureIdValue));
        if (type == "dislocation") dislocationCounter = max2(dislocationCounter, serialFromId(featureIdValue));
        if (type == "dislocation_loop") loopCounter = max2(loopCounter, serialFromId(Roi.getProperty("Object_id")));
        if (type == "interface") interfaceCounter = max2(interfaceCounter, serialFromId(featureIdValue));
    }
    lightCachedCavityCount = activeCavityCount;
}

// -----------------------------------------------------------------------------
// Cancellation-safe drawing support
// -----------------------------------------------------------------------------

function waitForUserSafe(title, message) {
    // The native IJM waitForUser() throws RuntimeException("Macro canceled")
    // when Cancel or Esc is used. Calling WaitForUserDialog directly lets us
    // inspect escPressed(), reset the Escape state and return normally.
    safeTitle = jsEscape(title);
    safeMessage = jsEscape(message);
    code = "var IJ=Packages.ij.IJ;var D=Packages.ij.gui.WaitForUserDialog;";
    code = code + "var d=new D('" + safeTitle + "','" + safeMessage + "');";
    code = code + "function relabel(c){try{var a=c.getComponents();for(var i=0;i<a.length;i++){var x=a[i];try{var t=String(x.getLabel());if(t.indexOf('Cancel')>=0)x.setLabel(' Terminar ');}catch(e){}try{relabel(x);}catch(e){}}}catch(e){}}";
    code = code + "relabel(d);d.pack();d.show();var cancelled=d.escPressed();IJ.resetEscape();String(cancelled?'0':'1');";
    safeResult = eval("js", code);
    if (safeResult == "1") return 1;
    return 0;
}

function finishCancelledDrawing(message) {
    run("ROI Manager...");
    roiManager("deselect");
    Roi.selectNone;
    ok = activateMacroToolByPrefix("Cavity select");
    if (!ok) setTool("hand");
    refreshControlPanelStatus();
    showStatus(message);
}

// -----------------------------------------------------------------------------
// Scale and surface references
// -----------------------------------------------------------------------------

function calibrateScaleFromLine() {
    if (nImages() <= 0) exit("Abre primero la imagen o collage TEM.");
    if (!v55VerifyQuantitativeIntegrity("calibrar la escala", 1, 1)) return;
    run("ROI Manager...");

    existingMeasurements = countTypeFast("cavity");
    if (existingMeasurements > 0) {
        proceed = getBoolean("Hay " + existingMeasurements + " cavidades. Sustituir la escala recalculara todos los valores fisicos desde la geometria actual.\n\nContinuar?", "Sustituir escala", "Cancelar");
        if (!proceed) return;
    }

    setTool("line");
    if (!waitForUserSafe("Calibrar escala", "Dibuja una linea recta exactamente sobre una barra de escala o una distancia conocida.\nPulsa OK cuando termine o Cancelar/Esc para conservar la escala anterior.")) {
        finishCancelledDrawing("Calibracion cancelada. La escala anterior se conserva.");
        return;
    }
    getLine(x1, y1, x2, y2, lw);
    if (x1 == -1) exit("No hay una seleccion de linea recta.");
    dpx = sqrt((x2-x1)*(x2-x1) + (y2-y1)*(y2-y1));
    if (dpx <= 0) exit("La linea de escala tiene longitud cero.");

    defaultNm = scaleKnownNm;
    if (defaultNm <= 0) defaultNm = 50;
    knownNm = getNumber("Longitud real de la linea (nm):", defaultNm);
    if (knownNm <= 0) exit("La longitud conocida debe ser mayor que cero.");

    newNmPerPx = knownNm/dpx;
    if (!getBoolean("Longitud en pixels: " + d2s(dpx, 3) + " px\nLongitud real: " + d2s(knownNm, 6) + " nm\nEscala resultante: " + d2s(newNmPerPx, 9) + " nm/px\n\nAceptar y sustituir la escala activa?", "Aceptar escala", "Cancelar")) return;

    snapshotCurrentView();
    setVoxelSize(newNmPerPx, newNmPerPx, 1, "nm");
    updateScaleOrExit();
    scaleKnownNm = knownNm;
    scaleDefined = 1;

    deleteScaleRoisOnly();
    makeLine(x1, y1, x2, y2);
    Roi.setName(scaleReferenceName);
    Roi.setGroup(0);
    Roi.setStrokeColor("yellow");
    Roi.setUnscalableStrokeWidth(3);
    setCommonObjectProperties();
    v4StampCurrentRevisionBinding();
    Roi.setProperty("Type", "scale_reference");
    Roi.setProperty("Known_length_nm", d2s(knownNm, 9));
    Roi.setProperty("Line_length_px", d2s(dpx, 9));
    Roi.setProperty("Scale_nm_per_px", d2s(newNmPerPx, 12));
    Roi.setProperty("X1_px", d2s(x1, 6));
    Roi.setProperty("Y1_px", d2s(y1, 6));
    Roi.setProperty("X2_px", d2s(x2, 6));
    Roi.setProperty("Y2_px", d2s(y2, 6));
    roiManager("add");

    rebuildScaleLabelFromReference(0);

    syncAllObjects(0);
    showAllRois();
    restoreViewSnapshot();
    updateSessionMetadataRoi();
    refreshControlPanelStatus();
    showStatus("Escala v8 definida: " + d2s(newNmPerPx, 9) + " nm/px. La linea amarilla permanece visible.");
}

function verifyScaleReference() {
    if (!v55VerifyQuantitativeIntegrity("verificar la referencia de escala", 1, 1)) return;
    if (!loadScaleReferenceFromRois()) exit("No existe una ROI SCALE_REFERENCE. Define la escala primero.");
    idx = findScaleReferenceIndex();
    safeRoiSelect(idx);
    getLine(x1, y1, x2, y2, lw);
    if (x1 == -1) exit("La referencia de escala ya no es una linea recta valida.");
    dpx = sqrt((x2-x1)*(x2-x1) + (y2-y1)*(y2-y1));
    known = propNumber("Known_length_nm", scaleKnownNm);
    calculated = known/dpx;
    updateScaleOrExit();
    diffPct = 100*abs(calculated-nmPerPixelX)/nmPerPixelX;
    msg = "Referencia visible: " + d2s(known, 6) + " nm\n";
    msg = msg + "Longitud actual: " + d2s(dpx, 4) + " px\n";
    msg = msg + "Escala de la linea: " + d2s(calculated, 10) + " nm/px\n";
    msg = msg + "Escala de la imagen: " + d2s(nmPerPixelX, 10) + " nm/px\n";
    msg = msg + "Diferencia: " + d2s(diffPct, 4) + " %";
    if (diffPct > 1) msg = msg + "\n\nADVERTENCIA: la referencia y la calibracion difieren mas del 1 %.";
    showMessage("Verificacion de escala", msg);
}

function loadScaleReferenceFromRois() {
    idx = findScaleReferenceIndex();
    if (idx < 0) {
        scaleDefined = 0;
        return 0;
    }
    safeRoiSelect(idx);
    getLine(x1, y1, x2, y2, lw);
    if (x1 == -1) return 0;
    dpx = sqrt((x2-x1)*(x2-x1) + (y2-y1)*(y2-y1));
    known = propNumber("Known_length_nm", scaleKnownNm);
    if (dpx <= 0 || known <= 0) return 0;
    nmpp = known/dpx;
    setVoxelSize(nmpp, nmpp, 1, "nm");
    updateScaleMaybe();
    scaleKnownNm = known;
    scaleDefined = 1;
    return 1;
}

function findScaleReferenceIndex() {
    n = roiManager("count");
    idx = -1;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        name = Roi.getName;
        type = Roi.getProperty("Type");
        legacyScaleLine = startsWith(name, scaleReferenceName + "_") && name != scaleLabelName && type != "scale_label";
        if (type == "scale_reference" || name == scaleReferenceName || legacyScaleLine) idx = i;
    }
    return idx;
}

function deleteScaleRoisOnly() {
    n = roiManager("count");
    for (i=n-1; i>=0; i=i-1) {
        safeRoiSelect(i);
        type = Roi.getProperty("Type");
        name = Roi.getName;
        if (type == "scale_reference" || type == "scale_label" || name == scaleReferenceName || name == scaleLabelName || startsWith(name, scaleReferenceName + "_")) roiManager("delete");
    }
}

function deleteScaleLabelsOnly() {
    nScaleLabels = roiManager("count");
    for (jScaleLabel=nScaleLabels-1; jScaleLabel>=0; jScaleLabel=jScaleLabel-1) {
        safeRoiSelect(jScaleLabel);
        scaleLabelTypeValue = Roi.getProperty("Type");
        scaleLabelNameValue = Roi.getName;
        if (scaleLabelTypeValue == "scale_label" || scaleLabelNameValue == scaleLabelName || startsWith(scaleLabelNameValue, scaleLabelName + "_")) roiManager("delete");
    }
}

function rebuildScaleLabelFromReference(verbose) {
    if (nImages() <= 0) return 0;
    run("ROI Manager...");
    scaleLineIndex = findScaleReferenceIndex();
    if (scaleLineIndex < 0) {
        if (verbose) showMessage("Etiqueta de escala", "No existe una ROI SCALE_REFERENCE. Define primero la escala.");
        return 0;
    }

    safeRoiSelect(scaleLineIndex);
    getLine(sx1, sy1, sx2, sy2, scaleLineWidth);
    if (sx1 == -1) {
        if (verbose) showMessage("Etiqueta de escala", "La referencia de escala no es una linea recta valida.");
        return 0;
    }
    scaleLineLengthPx = sqrt((sx2-sx1)*(sx2-sx1)+(sy2-sy1)*(sy2-sy1));
    scaleLabelKnownNm = propNumber("Known_length_nm", scaleKnownNm);
    if (scaleLineLengthPx <= 0 || scaleLabelKnownNm <= 0) {
        if (verbose) showMessage("Etiqueta de escala", "La linea o la longitud conocida no son validas.");
        return 0;
    }

    scaleLabelNmPerPx = scaleLabelKnownNm/scaleLineLengthPx;
    scaleLabelTextValue = d2s(scaleLabelKnownNm, 3) + " nm | " + d2s(scaleLabelNmPerPx, 6) + " nm/px";
    scaleLabelFontPx = 24;
    setFont("SansSerif", scaleLabelFontPx, "bold antialiased");
    scaleLabelTextWidth = getStringWidth(scaleLabelTextValue);

    scaleLabelX = min2(sx1, sx2);
    scaleLabelY = min2(sy1, sy2)-scaleLabelFontPx-8;
    if (scaleLabelY < 0) scaleLabelY = max2(sy1, sy2)+8;
    if (scaleLabelX+scaleLabelTextWidth+6 > getWidth()) scaleLabelX = getWidth()-scaleLabelTextWidth-6;
    if (scaleLabelX < 0) scaleLabelX = 0;
    if (scaleLabelY+2*scaleLabelFontPx+6 > getHeight()) scaleLabelY = getHeight()-2*scaleLabelFontPx-6;
    if (scaleLabelY < 0) scaleLabelY = 0;

    deleteScaleLabelsOnly();
    setColor("yellow");
    makeText(scaleLabelTextValue, round(scaleLabelX), round(scaleLabelY));
    Roi.setName(scaleLabelName);
    Roi.setGroup(0);
    Roi.setFillColor("#aa000000");
    Roi.setStrokeColor("#ffff00");
    Roi.setAntiAlias(1);
    Roi.setFontSize(scaleLabelFontPx);
    Roi.setJustification("left");
    setCommonObjectProperties();
    v4StampCurrentRevisionBinding();
    Roi.setProperty("Type", "scale_label");
    Roi.setProperty("Known_length_nm", d2s(scaleLabelKnownNm, 9));
    Roi.setProperty("Scale_nm_per_px", d2s(scaleLabelNmPerPx, 12));
    Roi.setProperty("Label_text", scaleLabelTextValue);
    Roi.setProperty("Font_size_px", d2s(scaleLabelFontPx, 0));
    roiManager("add");
    showAllRois();
    if (verbose) showStatus("Etiqueta de escala recreada: " + scaleLabelTextValue);
    return 1;
}

function defineSurfaceReference() {
    if (nImages() <= 0) exit("Abre primero la imagen o collage TEM.");
    if (!v55VerifyQuantitativeIntegrity("definir la superficie de referencia", 1, 1)) return;
    updateScaleOrExit();
    run("ROI Manager...");

    choices = newArray("Polilinea segmentada", "Linea recta", "Linea libre");
    Dialog.create("Definir superficie de referencia");
    Dialog.addChoice("Tipo de trazado:", choices, choices[0]);
    Dialog.addMessage("La superficie sera unica. La anterior solo se sustituye despues de validar el nuevo trazado y el lado del material.");
    Dialog.show();
    choice = Dialog.getChoice();
    tool = "polyline";
    selectionKind = "polyline";
    if (choice == "Linea recta") { tool = "line"; selectionKind = "polyline"; }
    if (choice == "Linea libre") { tool = "freeline"; selectionKind = "freeline"; }

    setTool(tool);
    if (!waitForUserSafe("Trazar superficie", "Dibuja la superficie de referencia.\nPara una polilinea, haz clicks sucesivos y termina con doble click.\nPulsa OK al finalizar o Cancelar/Esc para conservar la superficie anterior.")) {
        finishCancelledDrawing("Definicion de superficie cancelada. La superficie anterior se conserva.");
        return;
    }
    st = selectionType;
    if (st != 5 && st != 6 && st != 7) exit("La seleccion no es una linea recta, segmentada o libre.");
    getSelectionCoordinates(newSX, newSY);
    if (newSX.length < 2) exit("La superficie necesita al menos dos puntos.");

    setTool("point");
    if (!waitForUserSafe("Indicar el interior del material", "Haz un click claramente dentro del material, en el lado positivo de la superficie.\nPulsa OK despues del click o Cancelar/Esc para conservar la superficie anterior.")) {
        finishCancelledDrawing("Seleccion del lado del material cancelada. La superficie anterior se conserva.");
        return;
    }
    if (selectionType != 10) exit("No se ha definido un punto de material. La superficie anterior se conserva.");
    getSelectionCoordinates(px, py);
    if (px.length < 1) exit("No se ha definido un punto de material. La superficie anterior se conserva.");
    matX = px[0];
    matY = py[0];
    matSign = materialSideSignForPolyline(matX, matY, newSX, newSY);
    if (matSign == 0) exit("El punto de material esta exactamente sobre la superficie. Repite la operacion y elige un punto claramente separado.");

    snapshotCurrentView();
    deleteSurfaceRoisOnly();
    makeSelection(selectionKind, newSX, newSY);
    Roi.setName(surfaceReferenceName);
    Roi.setGroup(6);
    Roi.setStrokeColor("cyan");
    Roi.setUnscalableStrokeWidth(3);
    setCommonObjectProperties();
    v4StampCurrentRevisionBinding();
    Roi.setProperty("Type", "surface_reference");
    Roi.setProperty("Surface_side_defined", "1");
    Roi.setProperty("Material_point_x_px", d2s(matX, 6));
    Roi.setProperty("Material_point_y_px", d2s(matY, 6));
    Roi.setProperty("Material_side_sign", d2s(matSign, 0));
    Roi.setProperty("Point_count", d2s(newSX.length, 0));
    roiManager("add");

    surfaceDefined = 1;
    surfaceSideDefined = 1;
    surfaceMaterialX = matX;
    surfaceMaterialY = matY;
    surfaceMaterialSign = matSign;
    refreshSurfaceGeometryFromRoi();

    syncAllObjects(0);
    showAllRois();
    restoreViewSnapshot();
    updateSessionMetadataRoi();
    refreshControlPanelStatus();
    showStatus("Superficie unica definida. Profundidad positiva hacia el punto de material seleccionado.");
}


function loadSurfaceReferenceFromRois() {
    idx = findSurfaceReferenceIndex();
    if (idx < 0) {
        surfaceDefined = 0;
        surfaceX = newArray(0);
        surfaceY = newArray(0);
        return 0;
    }
    safeRoiSelect(idx);
    Roi.getCoordinates(surfaceX, surfaceY);
    if (surfaceX.length < 2) return 0;
    surfaceDefined = 1;
    surfaceSideDefined = round(propNumber("Surface_side_defined", surfaceSideDefined));
    surfaceMaterialX = propNumber("Material_point_x_px", propNumber("Surface_material_x_px", surfaceMaterialX));
    surfaceMaterialY = propNumber("Material_point_y_px", propNumber("Surface_material_y_px", surfaceMaterialY));
    surfaceMaterialSign = propNumber("Material_side_sign", propNumber("Surface_material_sign", surfaceMaterialSign));
    if (surfaceMaterialSign == 0 || isNaN(surfaceMaterialSign)) surfaceMaterialSign = 1;
    return 1;
}

function refreshSurfaceGeometryFromRoi() {
    idx = findSurfaceReferenceIndex();
    if (idx < 0) {
        surfaceDefined = 0;
        surfaceX = newArray(0);
        surfaceY = newArray(0);
        return 0;
    }
    safeRoiSelect(idx);
    Roi.getCoordinates(surfaceX, surfaceY);
    if (surfaceX.length < 2) {
        surfaceDefined = 0;
        return 0;
    }
    surfaceDefined = 1;
    surfaceSideDefined = round(propNumber("Surface_side_defined", surfaceSideDefined));
    surfaceMaterialX = propNumber("Material_point_x_px", surfaceMaterialX);
    surfaceMaterialY = propNumber("Material_point_y_px", surfaceMaterialY);
    surfaceMaterialSign = propNumber("Material_side_sign", surfaceMaterialSign);
    if (surfaceMaterialSign == 0 || isNaN(surfaceMaterialSign)) surfaceMaterialSign = 1;
    return 1;
}

function findSurfaceReferenceIndex() {
    n = roiManager("count");
    idx = -1;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        name = Roi.getName;
        type = Roi.getProperty("Type");
        if (type == "surface_reference" || type == "surface" || name == surfaceReferenceName || startsWith(name, "SURFACE_REFERENCE")) idx = i;
    }
    return idx;
}

function deleteSurfaceRoisOnly() {
    n = roiManager("count");
    for (i=n-1; i>=0; i=i-1) {
        safeRoiSelect(i);
        name = Roi.getName;
        type = Roi.getProperty("Type");
        if (type == "surface_reference" || type == "surface" || name == surfaceReferenceName || startsWith(name, "SURFACE_REFERENCE")) roiManager("delete");
    }
}

function materialSideSignForPolyline(x, y, xs, ys) {
    updateScaleOrExit();
    xnm = x*nmPerPixelX;
    ynm = y*nmPerPixelY;
    best = 1e300;
    bestCross = 0;
    for (j=0; j<xs.length-1; j++) {
        x1 = xs[j]*nmPerPixelX;
        y1 = ys[j]*nmPerPixelY;
        x2 = xs[j+1]*nmPerPixelX;
        y2 = ys[j+1]*nmPerPixelY;
        vx = x2-x1;
        vy = y2-y1;
        len2 = vx*vx+vy*vy;
        if (len2 <= 0) continue;
        t = ((xnm-x1)*vx+(ynm-y1)*vy)/len2;
        if (t < 0) t = 0;
        if (t > 1) t = 1;
        qx = x1+t*vx;
        qy = y1+t*vy;
        dx = xnm-qx;
        dy = ynm-qy;
        d2 = dx*dx+dy*dy;
        if (d2 < best) {
            best = d2;
            bestCross = vx*(ynm-y1)-vy*(xnm-x1);
        }
    }
    if (bestCross > 0) return 1;
    if (bestCross < 0) return -1;
    return 0;
}

function computeSurfaceMetrics(x, y) {
    surfaceLastDistanceNm = NaN;
    surfaceLastSignedDistanceNm = NaN;
    surfaceLastArcNm = NaN;
    surfaceLastNearestXpx = NaN;
    surfaceLastNearestYpx = NaN;
    surfaceLastTangentAngleDeg = NaN;
    if (!surfaceDefined || surfaceX.length < 2) return 0;

    xnm = x*nmPerPixelX;
    ynm = y*nmPerPixelY;
    bestD2 = 1e300;
    cumulative = 0;
    bestArc = 0;
    bestCross = 0;
    bestQx = 0;
    bestQy = 0;
    bestVx = 1;
    bestVy = 0;

    for (j=0; j<surfaceX.length-1; j++) {
        x1 = surfaceX[j]*nmPerPixelX;
        y1 = surfaceY[j]*nmPerPixelY;
        x2 = surfaceX[j+1]*nmPerPixelX;
        y2 = surfaceY[j+1]*nmPerPixelY;
        vx = x2-x1;
        vy = y2-y1;
        segLen2 = vx*vx+vy*vy;
        segLen = sqrt(segLen2);
        if (segLen2 <= 0) continue;
        t = ((xnm-x1)*vx+(ynm-y1)*vy)/segLen2;
        if (t < 0) t = 0;
        if (t > 1) t = 1;
        qx = x1+t*vx;
        qy = y1+t*vy;
        dx = xnm-qx;
        dy = ynm-qy;
        d2 = dx*dx+dy*dy;
        if (d2 < bestD2) {
            bestD2 = d2;
            bestArc = cumulative+t*segLen;
            bestCross = vx*(ynm-y1)-vy*(xnm-x1);
            bestQx = qx;
            bestQy = qy;
            bestVx = vx;
            bestVy = vy;
        }
        cumulative = cumulative+segLen;
    }

    if (bestD2 >= 1e299) return 0;
    d = sqrt(bestD2);
    sd = d;
    if (surfaceSideDefined) {
        qSign = 1;
        if (bestCross < 0) qSign = -1;
        if (bestCross == 0) qSign = surfaceMaterialSign;
        if (qSign != surfaceMaterialSign) sd = -d;
    }
    surfaceLastDistanceNm = d;
    surfaceLastSignedDistanceNm = sd;
    surfaceLastArcNm = bestArc;
    surfaceLastNearestXpx = bestQx/nmPerPixelX;
    surfaceLastNearestYpx = bestQy/nmPerPixelY;
    surfaceLastTangentAngleDeg = atan2(bestVy, bestVx)*180/PI_VAL;
    return 1;
}

function configureBands() {
    imageOk = lightEnsureCurrentImage();
    if (imageOk == 0) return;
    oldBand = bandNm;
    oldCount = bandCount;
    oldExclude = excludeNegativeDepth;
    Dialog.create("Bandas de profundidad");
    Dialog.addNumber("Ancho de banda (nm):", bandNm);
    Dialog.addNumber("Numero de bandas:", bandCount);
    Dialog.addCheckbox("Excluir profundidad negativa del resumen", excludeNegativeDepth);
    Dialog.show();
    newBand = Dialog.getNumber();
    newCount = round(Dialog.getNumber());
    newExclude = Dialog.getCheckbox();
    if (newBand <= 0) { showMessage("Valor invalido", "El ancho de banda debe ser mayor que cero."); return; }
    if (newCount < 1) { showMessage("Valor invalido", "El numero de bandas debe ser al menos 1."); return; }
    changed = 0;
    if (lightNumberChanged(newBand, oldBand) == 1) changed = 1;
    if (newCount != oldCount) changed = 1;
    if (newExclude != oldExclude) changed = 1;
    objects = lightScientificObjectCount();
    if (changed == 1 && objects > 0) {
        if (!getBoolean("Cambiar las bandas recalculara las propiedades de profundidad y creara una revision nueva.\n\nContinuar?", "Cambiar y revisar", "Cancelar")) return;
        if (!quantitativeRevisionPreflight()) return;
    }
    bandNm = newBand;
    bandCount = newCount;
    excludeNegativeDepth = newExclude;
    syncAllObjects(0);
    updateSessionMetadataRoi();
    lightWriteImageMetadata();
    lightUpdateRegistry();
    rev = "";
    if (changed == 1 && objects > 0) {
        rev = lightSaveRevisionCore(0);
        if (rev == "") {
            bandNm = oldBand;
            bandCount = oldCount;
            excludeNegativeDepth = oldExclude;
            syncAllObjects(0);
            updateSessionMetadataRoi();
            lightWriteImageMetadata();
            lightUpdateRegistry();
            showMessage("Bandas restauradas", "No se pudo guardar la revision. Se restauraron los valores anteriores.");
            return;
        }
    }
    lightAppendLog("DEPTH_BANDS_CONFIGURED", "width_nm="+lightNum(bandNm)+"; count="+bandCount+"; exclude_negative="+excludeNegativeDepth+"; revision="+rev);
    refreshControlPanelStatus();
    showStatus("Bandas: "+bandCount+" x "+d2s(bandNm,3)+" nm.");
}



// -----------------------------------------------------------------------------
// Cavity creation, selection, editing and deletion
// -----------------------------------------------------------------------------

function activateMeasureTool() {
    if (nImages() <= 0) {
        showMessage("Sin imagen", "Abre primero la imagen o micrografia TEM.");
        return;
    }
    updateScaleOrExit();
    lightInteractiveMode = "measure";
    lightInteractivePushState("measure");
    installInteractionListeners(0);
    ok = activateMacroToolByPrefix("Cavity measure");
    if (!ok) {
        showMessage("Herramienta no instalada", "No se encontro la herramienta 'Cavity Light measure Tool'. Reinstala el toolset R9 y reinicia Fiji.");
        return;
    }
    refreshControlPanelStatus();
    showStatus("Modo MEDIR CONTINUO activo: arrastra sobre cada diametro. Cada linea crea una cavidad; Esc o Ctrl+E termina.");
}

function activateAddTool() {
    if (nImages() > 0) lightInteractivePullActiveDiameter();
    if (nImages() <= 0) {
        showMessage("Sin imagen", "Abre primero la imagen TEM que vas a analizar.");
        return;
    }
    if (activeDiameterNm <= 0) {
        showMessage("Diametro no definido", "Mide primero un diametro o introduce un diametro activo.");
        return;
    }
    updateScaleOrExit();
    lightInteractiveMode = "add";
    lightInteractivePushState("add");
    installInteractionListeners(0);
    ok = activateMacroToolByPrefix("Cavity add");
    if (!ok) {
        showMessage("Herramienta no instalada", "No se encontro la herramienta 'Cavity Light add Tool'. Reinstala el toolset R9 y reinicia Fiji.");
        return;
    }
    lightInteractivePushState("add");
    refreshControlPanelStatus();
    showStatus("Modo ANADIR activo: el cursor muestra el diametro activo. Alt+rueda cambia su tamano sin zoom; cada click crea una cavidad. Esc o Ctrl+E termina.");
}

function activateSelectTool() {
    lightInteractiveMode = "select";
    lightInteractivePushState("select");
    installInteractionListeners(0);
    // The installed toolbar name can be either the Light or legacy form.
    ok = activateMacroToolByPrefix("Cavity select edit");
    if (!ok) ok = activateMacroToolByPrefix("Cavity select");
    if (!ok) {
        // Fallback: built-in oval still allows moving/resizing an already selected ROI,
        // but click-to-select will not be available until the macro is reinstalled.
        setTool(1); // built-in oval tool
        if (!missingMacroToolWarningShown) {
            missingMacroToolWarningShown = 1;
            showMessage("Herramienta de seleccion no encontrada",
                "No encuentro la herramienta macro 'Cavity select edit' en la barra.\n\n"+
                "He activado la herramienta oval estandar como respaldo.\n"+
                "Para recuperar la seleccion por click, instala o repara Cavity_TEM_Studio_v5_6_0.ijm desde Cavity TEM Studio, reinicia Fiji y seleccionalo desde More Tools (>>).");
        } else showStatus("Herramienta Cavity select edit no encontrada; usando oval estandar como respaldo.");
        return;
    }
    refreshControlPanelStatus();
    showStatus("Modo SELECCIONAR activo: click sobre una cavidad; arrastrala para moverla o usa Alt+rueda (Ctrl+Alt tambien funciona) para cambiar su diametro.");
}

function cancelCaptureMode() {
    activateSelectTool();
    showStatus("Modo de captura terminado. Seleccion/edicion activa.");
}

function activateMacroToolByPrefix(prefix) {
    safePrefix = jsEscape(prefix);
    // Try several exact toolbar names. ij.gui.Toolbar.getToolId() is not a prefix
    // search in all Fiji versions, despite the name of this helper.
    code = "var T=Packages.ij.gui.Toolbar;var tb=T.getInstance();var result='0';"+
           "if(tb!=null){var names=[];"+
           "names.push('" + safePrefix + "');"+
           "names.push('" + safePrefix + " Tool');"+
           "if(String('" + safePrefix + "').indexOf('Cavity select')==0){names.push('Cavity Light select edit');names.push('Cavity Light select edit Tool');names.push('Cavity select');names.push('Cavity select Tool');names.push('Cavity select edit');names.push('Cavity select edit Tool');}"+
           "if(String('" + safePrefix + "').indexOf('Cavity measure')==0){names.push('Cavity Light measure');names.push('Cavity Light measure Tool');names.push('Cavity measure');names.push('Cavity measure Tool');}"+
           "if(String('" + safePrefix + "').indexOf('Cavity add')==0){names.push('Cavity Light add');names.push('Cavity Light add Tool');names.push('Cavity add');names.push('Cavity add Tool');}"+
           "for(var k=0;k<names.length;k++){try{var id=tb.getToolId(String(names[k]));if(id>=0){tb.setTool(id);result='1';break;}}catch(e){}}}"+
           "result;";
    resultText = eval("js", code);
    if (resultText == "1") return 1;
    return 0;
}

function currentInteractionModeLabel() {
    toolNameNow = IJ.getToolName();
    label = toolNameNow;
    if (startsWith(toolNameNow, "Cavity measure") || startsWith(toolNameNow, "Cavity Light measure")) label = "medir continuo";
    else if (startsWith(toolNameNow, "Cavity add") || startsWith(toolNameNow, "Cavity Light add")) label = "anadir";
    else if (startsWith(toolNameNow, "Cavity select") || startsWith(toolNameNow, "Cavity Light select")) label = "seleccionar";
    else if (toolNameNow == "oval" || toolNameNow == "ellipse") label = "editar ROI";
    else if (toolNameNow == "hand") label = "mano/pan";
    if (label == "") label = "sin identificar";
    return label;
}

function measureCavityByDrag() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (!updateScaleMaybe()) {
        showStatus("Define primero la escala antes de medir cavidades.");
        return;
    }

    leftButton = 16;
    getCursorLoc(mx1, my1, mz, mflags);
    if ((mflags & leftButton) == 0) return;
    if (mx1 < 0 || my1 < 0) return;

    mx2 = mx1;
    my2 = my1;
    lastMx = mx1;
    lastMy = my1;
    setOption("DisablePopupMenu", true);
    while ((mflags & leftButton) != 0) {
        getCursorLoc(mx2, my2, mz, mflags);
        if (mx2 != lastMx || my2 != lastMy) {
            makeLine(mx1, my1, mx2, my2);
            mdxNm = (mx2-mx1)*nmPerPixelX;
            mdyNm = (my2-my1)*nmPerPixelY;
            previewDiameterNm = sqrt(mdxNm*mdxNm+mdyNm*mdyNm);
            showStatus("Modo MEDIR CONTINUO: d=" + d2s(previewDiameterNm, 4) + " nm. Suelta para crear la cavidad.");
            lastMx = mx2;
            lastMy = my2;
        }
        wait(10);
    }
    setOption("DisablePopupMenu", false);

    mdxNm = (mx2-mx1)*nmPerPixelX;
    mdyNm = (my2-my1)*nmPerPixelY;
    measuredDiameterNm = sqrt(mdxNm*mdxNm+mdyNm*mdyNm);
    if (measuredDiameterNm <= 0) {
        showStatus("Medicion ignorada: arrastra una linea de longitud mayor que cero.");
        return;
    }

    activeDiameterNm = measuredDiameterNm;
    lightInteractivePushState(lightInteractiveMode);
    measuredCx = (mx1+mx2)/2;
    measuredCy = (my1+my2)/2;
    addCavityCircle(measuredCx, measuredCy, measuredDiameterNm, "continuous_line_measurement");
    activateMacroToolByPrefix("Cavity measure");
    refreshControlPanelStatus();
    showStatus("Cavidad creada: d=" + d2s(measuredDiameterNm, 4) + " nm. Sigue arrastrando; Esc o Ctrl+E termina.");
}

function measureDiameterFromLine(addCircle) {
    if (!v4PrepareImageForMeasurement(1)) return;
    updateScaleOrExit();
    setTool("line");
    if (!waitForUserSafe("Medir diametro", "Dibuja una linea recta sobre el diametro de la cavidad.\nPulsa OK al terminar o Cancelar/Esc para salir.")) {
        finishCancelledDrawing("Medicion puntual cancelada.");
        return;
    }
    getLine(x1, y1, x2, y2, lw);
    if (x1 == -1) exit("No hay una linea de diametro.");
    dxNm = (x2-x1)*nmPerPixelX;
    dyNm = (y2-y1)*nmPerPixelY;
    dNm = sqrt(dxNm*dxNm+dyNm*dyNm);
    if (dNm <= 0) exit("El diametro medido es cero.");
    activeDiameterNm = dNm;
    lightInteractivePushState(lightInteractiveMode);
    cx = (x1+x2)/2;
    cy = (y1+y2)/2;
    if (addCircle) {
        addCavityCircle(cx, cy, dNm, "line_measurement");
    } else {
        updateSessionMetadataRoi();
        refreshControlPanelStatus();
        showStatus("Diametro activo: " + d2s(activeDiameterNm, 4) + " nm. Activa Modo anadir para repetirlo.");
    }
}

function addCavityAtCursor() {
    if (!v4PrepareImageForMeasurement(1)) return;
    lightInteractivePullActiveDiameter();
    if (activeDiameterNm <= 0) exit("Primero mide o introduce un diametro activo.");
    updateScaleOrExit();
    getCursorLoc(x, y, z, flags);
    addCavityCircle(x, y, activeDiameterNm, "active_diameter_click");
    lightInteractivePushState("add");
}

function selectOrForceAddAtCursor() {
    if (!v4PrepareImageForMeasurement(1)) return;
    updateScaleOrExit();
    getCursorLoc(x, y, z, flags);
    shift = 1;
    if ((flags & shift) != 0) {
        if (activeDiameterNm <= 0) exit("No hay diametro activo para Shift+click.");
        addCavityCircle(x, y, activeDiameterNm, "shift_click");
        return;
    }
    idx = findCavityAtPoint(x, y);
    if (idx < 0) {
        showStatus("No hay una cavidad en ese punto. Usa Shift+click o Modo anadir para crear una.");
        return;
    }
    snapshotCurrentView();
    safeRoiSelect(idx);
    id = cavityIdCurrent();
    restoreViewSnapshot();
    setTool(1); // built-in oval tool
    showStatus(id + " seleccionada. Arrastra para moverla o usa Alt+rueda (Ctrl+Alt tambien funciona) para cambiar su tamano. R9 sincroniza automaticamente al terminar.");
}

function addCavityCircle(cx, cy, dNm, source) {
    updateScaleOrExit();
    run("ROI Manager...");
    snapshotCurrentView();
    wPx = dNm/nmPerPixelX;
    hPx = dNm/nmPerPixelY;
    if (wPx <= 0 || hPx <= 0) exit("Diametro o escala invalidos.");

    cavityCounter++;
    id = "CAV_" + IJ.pad(cavityCounter, 6);
    makeOval(cx-wPx/2, cy-hPx/2, wPx, hPx);
    Roi.setName(id);
    Roi.setProperty("Type", "cavity");
    Roi.setProperty("Cavity_id", id);
    Roi.setProperty("Cavity_serial", d2s(cavityCounter, 0));
    Roi.setProperty("Measurement_source", source);
    Roi.setProperty("Manual_excluded", "0");
    Roi.setProperty("Cavity_class", activeCavityClass);
    Roi.setProperty("Cavity_class_label", activeCavityClassLabel);
    Roi.setProperty("Cavity_confidence", activeCavityConfidence);
    Roi.setProperty("Duplicate_status", "clear");
    Roi.setProperty("Duplicate_partners", "");
    setCommonObjectProperties();
    v4StampCurrentRevisionBinding();
    roiManager("add");
    if (lightCachedCavityCount >= 0) lightCachedCavityCount++;
    idx = roiManager("count")-1;
    syncCavityAtIndex(idx);
    duplicatePartnersFast = lightCheckNewCavityDuplicatesFast(idx);
    lightInvalidateAnalysisCache();
    // In the combined Cavity TEM Studio toolset, attach the v4 project,
    // ROI-set, panel and surface metadata immediately.
    if (v4ProjectLoaded) {
        v4UpgradeRoiAtIndex(idx);
        safeRoiSelect(idx);
    }

    undoKind = "add";
    undoObjectId = id;
    undoDeletedName = "";
    undoAvailable = 1;

    overlayAppendOk = lightAppendRoiToShowAll(idx);
    if (overlayAppendOk == 0) showAllRois();
    restoreViewSnapshot();
    updateSessionMetadataRoi();
    refreshControlPanelStatus();
    lightInteractivePushState(lightInteractiveMode);
    statusText = "Anadida " + id + "; d=" + d2s(dNm, 3) + " nm. Etiqueta y nombre ROI Manager coinciden.";
    if (duplicatePartnersFast != "") statusText = statusText + " Posible duplicado: " + duplicatePartnersFast + ".";
    else statusText = statusText + " Duplicados se confirmaran al validar.";
    showStatus(statusText);
    return idx;
}

function findCavityAtPoint(x, y) {
    n = roiManager("count");
    best = -1;
    bestDist = 1e300;
    // Prefer a cavity that actually contains the point. Search from the end so
    // newly added/upper ROIs are considered when two objects overlap.
    for (i=n-1; i>=0; i=i-1) {
        safeRoiSelect(i);
        if (currentRoiIsCavity()) {
            contains = Roi.contains(round(x), round(y));
            Roi.getFloatBounds(rx, ry, rw, rh);
            rcx = rx+rw/2;
            rcy = ry+rh/2;
            dist = sqrt((x-rcx)*(x-rcx)+(y-rcy)*(y-rcy));
            if (contains && dist < bestDist) {
                best = i;
                bestDist = dist;
            }
        }
    }
    if (best >= 0) return best;

    // Small selection tolerance outside the outline. This tolerance is used
    // only for selection; it never prevents creation of a nearby cavity.
    bestDist = selectionTolerancePx;
    for (i=n-1; i>=0; i=i-1) {
        safeRoiSelect(i);
        if (currentRoiIsCavity()) {
            Roi.getFloatBounds(rx, ry, rw, rh);
            rcx = rx+rw/2;
            rcy = ry+rh/2;
            radius = 0.5*max2(rw, rh);
            distEdge = abs(sqrt((x-rcx)*(x-rcx)+(y-rcy)*(y-rcy))-radius);
            if (distEdge <= bestDist) {
                best = i;
                bestDist = distEdge;
            }
        }
    }
    return best;
}

function syncSelectedObject(verbose) {
    if (nImages() <= 0) return;
    if (v4ProjectLoaded && !v4RequireCurrentRevisionBinding("sincronizar la ROI", verbose)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) {
        if (verbose) showMessage("Sin seleccion", "Selecciona una ROI en la imagen o en el ROI Manager.");
        return;
    }
    commitActiveManagedRoi();
    safeRoiSelect(idx);
    type = currentRoiType();
    if (type == "cavity") syncCavityAtIndex(idx);
    else if (isLinearFeatureType(type)) syncLinearFeatureAtIndex(idx);
    else if (type == "dislocation_loop") syncDislocationLoopAtIndex(idx);
    else if (type == "panel" || type == "analysis_mask" || type == "exclusion") syncAreaObjectAtIndex(idx);
    else if (type == "surface_reference") {
        refreshSurfaceGeometryFromRoi();
        syncAllObjects(0);
    } else if (type == "scale_reference") {
        loadScaleReferenceFromRois();
        syncAllObjects(0);
    }
    updateSessionMetadataRoi();
    showAllRois();
    if (verbose && type == "cavity") activateMacroToolByPrefix("Cavity select");
    refreshControlPanelStatus();
    if (verbose) {
        if (type == "cavity") showStatus("Cavidad sincronizada. Modo SELECCIONAR listo para elegir la siguiente.");
        else showStatus("ROI seleccionada sincronizada desde su geometria actual.");
    }
}

function commitActiveManagedRoi() {
    idx = roiManager("index");
    if (idx < 0 || selectionType < 0) return 0;
    activeType = currentRoiType();
    if (isManagedType(activeType)) {
        roiManager("update");
        return 1;
    }
    return 0;
}

function takeDiameterFromSelected() {
    if (!v4PrepareImageForMeasurement(1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) exit("Selecciona una cavidad.");
    commitActiveManagedRoi();
    safeRoiSelect(idx);
    if (!currentRoiIsCavity()) exit("La ROI seleccionada no es una cavidad.");
    syncCavityAtIndex(idx);
    safeRoiSelect(idx);
    activeDiameterNm = propNumber("Equivalent_diameter_nm", propNumber("Diameter_nm", 0));
    lightInteractivePushState(lightInteractiveMode);
    updateSessionMetadataRoi();
    refreshControlPanelStatus();
    showStatus("Diametro activo tomado de " + cavityIdCurrent() + ": " + d2s(activeDiameterNm, 4) + " nm.");
}

function editSelectedCavityNumerically() {
    if (!v4PrepareImageForMeasurement(1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) exit("Selecciona una cavidad.");
    commitActiveManagedRoi();
    safeRoiSelect(idx);
    if (!currentRoiIsCavity()) exit("La ROI seleccionada no es una cavidad.");
    syncCavityAtIndex(idx);
    safeRoiSelect(idx);
    id = cavityIdCurrent();
    source = propString("Measurement_source", "edited_numeric");
    manualExcluded = propString("Manual_excluded", "0");
    existingClass = propString("Cavity_class", "confirmed");
    existingClassLabel = propString("Cavity_class_label", cavityClassLabel(existingClass));
    existingConfidence = propString("Cavity_confidence", "high");
    Roi.getFloatBounds(x, y, w, h);
    cx = x+w/2;
    cy = y+h/2;
    d = propNumber("Equivalent_diameter_nm", sqrt((w*nmPerPixelX)*(h*nmPerPixelY)));

    Dialog.create("Editar " + id);
    Dialog.addNumber("Centro X (px):", cx);
    Dialog.addNumber("Centro Y (px):", cy);
    Dialog.addNumber("Diametro equivalente (nm):", d);
    Dialog.show();
    newCx = Dialog.getNumber();
    newCy = Dialog.getNumber();
    newD = Dialog.getNumber();
    if (newD <= 0) exit("El diametro debe ser mayor que cero.");

    wPx = newD/nmPerPixelX;
    hPx = newD/nmPerPixelY;
    makeOval(newCx-wPx/2, newCy-hPx/2, wPx, hPx);
    Roi.setName(id);
    Roi.setProperty("Type", "cavity");
    Roi.setProperty("Cavity_id", id);
    Roi.setProperty("Cavity_serial", d2s(serialFromId(id), 0));
    Roi.setProperty("Measurement_source", source + ";numeric_edit");
    Roi.setProperty("Manual_excluded", manualExcluded);
    Roi.setProperty("Cavity_class", existingClass);
    Roi.setProperty("Cavity_class_label", existingClassLabel);
    Roi.setProperty("Cavity_confidence", existingConfidence);
    Roi.setProperty("Duplicate_status", "clear");
    Roi.setProperty("Duplicate_partners", "");
    setCommonObjectProperties();
    roiManager("update");
    activeDiameterNm = newD;
    syncCavityAtIndex(idx);
    scanAllDuplicates(0);
    updateSessionMetadataRoi();
    showAllRois();
    activateMacroToolByPrefix("Cavity select");
    refreshControlPanelStatus();
    showStatus(id + " actualizada. Modo SELECCIONAR listo para continuar.");
}

function toggleSelectedInclusion() {
    if (!v4PrepareImageForMeasurement(1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) exit("Selecciona una cavidad.");
    commitActiveManagedRoi();
    safeRoiSelect(idx);
    if (!currentRoiIsCavity()) exit("Esta accion solo se aplica a cavidades.");
    excluded = round(propNumber("Manual_excluded", 0));
    excluded = 1-excluded;
    Roi.setProperty("Manual_excluded", d2s(excluded, 0));
    roiManager("update");
    syncCavityAtIndex(idx);
    showAllRois();
    activateMacroToolByPrefix("Cavity select");
    refreshControlPanelStatus();
    if (excluded) showStatus(cavityIdCurrent() + " excluida manualmente. Modo SELECCIONAR listo.");
    else showStatus(cavityIdCurrent() + " incluida de nuevo. Modo SELECCIONAR listo.");
}

function deleteSelectedManagedRoi() {
    if (!v4PrepareImageForMeasurement(1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) {
        showStatus("No hay una ROI seleccionada para borrar.");
        return;
    }
    commitActiveManagedRoi();
    safeRoiSelect(idx);
    name = Roi.getName;
    storedType = Roi.getProperty("Type");
    type = normalizedType(name, storedType);
    if (type == "session_metadata" || type == "scale_reference" || type == "scale_label" || type == "surface_reference") {
        showMessage("ROI protegida", "La escala y la superficie se sustituyen con sus comandos especificos. La metadata no se borra manualmente.");
        return;
    }
    if (!isManagedType(type)) {
        showMessage("ROI no gestionada", "La ROI seleccionada no pertenece a Cavity Toolset v8.");
        return;
    }

    snapshotCurrentView();
    Roi.copy;
    undoKind = "delete";
    undoObjectId = objectIdCurrent(type);
    undoDeletedName = name;
    undoAvailable = 1;
    roiManager("delete");
    if (type == "cavity") lightInvalidateCavityCount();
    showAllRois();
    restoreViewSnapshot();
    updateSessionMetadataRoi();
    activateMacroToolByPrefix("Cavity select");
    refreshControlPanelStatus();
    showStatus("Borrada " + name + ". Ctrl+Z permite restaurarla una vez; modo SELECCIONAR listo.");
}

function undoLastAddOrDelete() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (!undoAvailable) {
        showStatus("No hay una adicion o borrado v8 para deshacer.");
        return;
    }
    run("ROI Manager...");
    if (undoKind == "add") {
        idx = findObjectById(undoObjectId);
        if (idx >= 0) {
            safeRoiSelect(idx);
            roiManager("delete");
            showStatus("Deshecha la adicion de " + undoObjectId + ".");
        } else showStatus("No se encontro " + undoObjectId + " para deshacer.");
    } else if (undoKind == "delete") {
        Roi.paste;
        if (selectionType < 0) {
            showMessage("No se pudo deshacer", "El portapapeles de ROI ya no contiene el objeto borrado.");
            lightInvalidateCavityCount();
    undoAvailable = 0;
            return;
        }
        roiManager("add");
        idx = roiManager("count")-1;
        safeRoiSelect(idx);
        type = currentRoiType();
        if (type == "cavity") syncCavityAtIndex(idx);
        else if (isLinearFeatureType(type)) syncLinearFeatureAtIndex(idx);
        else if (type == "panel" || type == "analysis_mask" || type == "exclusion") syncAreaObjectAtIndex(idx);
        showStatus("Restaurada " + undoDeletedName + ".");
    }
    undoAvailable = 0;
    undoKind = "";
    undoObjectId = "";
    updateSessionMetadataRoi();
    showAllRois();
    refreshControlPanelStatus();
}

// -----------------------------------------------------------------------------
// Panels, masks, exclusions and linear microstructural features
// -----------------------------------------------------------------------------

function chooseAreaToolId(title) {
    choices = newArray("Rectangulo", "Poligono", "Mano alzada");
    Dialog.create(title);
    Dialog.addChoice("Herramienta para toda la serie:", choices, choices[0]);
    Dialog.addMessage("La herramienta permanecera activa. Pulsa Cancelar en la ventana de dibujo cuando hayas terminado la serie.");
    Dialog.show();
    choice = Dialog.getChoice();
    toolId = 0;
    if (choice == "Poligono") toolId = 2;
    if (choice == "Mano alzada") toolId = 3;
    return toolId;
}

function clearCurrentSelectionForContinuousDrawing() {
    roiManager("deselect");
    Roi.selectNone;
}

function addPanelRoi() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (nImages() <= 0) exit("Abre primero la imagen o collage TEM.");
    run("ROI Manager...");
    areaToolId = chooseAreaToolId("Paneles TEM - modo continuo");
    lastPanelSource = sourceFirst;
    if (lastPanelSource == "") lastPanelSource = "DM3";

    while (1) {
        setTool(areaToolId);
        if (!waitForUserSafe("Panel TEM - modo continuo",
            "Dibuja el siguiente panel TEM.\n"+
            "Pulsa OK para registrarlo.\n"+
            "Pulsa Cancelar o Esc cuando hayas terminado todos los paneles.")) {
            finishCancelledDrawing("Serie de paneles TEM finalizada.");
            return;
        }
        if (!isAreaSelection()) {
            showMessage("Panel no registrado", "La seleccion actual no es un area valida. Vuelve a dibujarla.");
            continue;
        }

        nextPanelSerial = panelCounter + 1;
        defaultId = "PANEL_" + IJ.pad(nextPanelSerial, 3);
        Dialog.create("Registrar panel TEM");
        Dialog.addString("ID del panel:", defaultId, 18);
        Dialog.addString("Archivo DM3 de origen:", lastPanelSource, 35);
        Dialog.addNumber("Orden del panel (mayor = preferente en solapes):", nextPanelSerial);
        Dialog.addString("Notas:", "", 40);
        Dialog.show();
        id = sanitizeId(Dialog.getString(), defaultId);
        source = Dialog.getString();
        order = round(Dialog.getNumber());
        notes = Dialog.getString();
        if (order < 1) order = nextPanelSerial;
        panelCounter = nextPanelSerial;
        if (source != "") lastPanelSource = source;

        snapshotCurrentView();
        Roi.setName(id);
        Roi.setGroup(0);
        Roi.setFillColor("#00000000");
        Roi.setStrokeColor("white");
        Roi.setUnscalableStrokeWidth(2);
        setCommonObjectProperties();
        v4StampCurrentRevisionBinding();
        Roi.setProperty("Type", "panel");
        Roi.setProperty("Panel_id", id);
        Roi.setProperty("Panel_order", d2s(order, 0));
        Roi.setProperty("Source_filename", source);
        Roi.setProperty("Notes", notes);
        roiManager("add");
        idx = roiManager("count")-1;
        syncAreaObjectAtIndex(idx);

        undoKind = "add";
        undoObjectId = id;
        undoDeletedName = "";
        undoAvailable = 1;
        showAllRois();
        restoreViewSnapshot();
        updateSessionMetadataRoi();
        refreshControlPanelStatus();
        clearCurrentSelectionForContinuousDrawing();
        showStatus("Panel registrado: " + id + " -> " + source + ". Dibuja el siguiente o pulsa Cancelar.");
    }
}

function addAnalysisMaskRoi() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (nImages() <= 0) exit("Abre primero la imagen o collage TEM.");
    run("ROI Manager...");
    areaToolId = chooseAreaToolId("Mascaras validas - modo continuo");
    Dialog.create("Mascaras validas - propiedades de la serie");
    Dialog.addString("Etiqueta comun:", "material_valido", 30);
    Dialog.show();
    seriesLabel = Dialog.getString();

    while (1) {
        setTool(areaToolId);
        if (!waitForUserSafe("Mascara valida - modo continuo",
            "Dibuja la siguiente region de material observable y cuantificable.\n"+
            "Pulsa OK para registrarla.\n"+
            "Pulsa Cancelar o Esc cuando hayas terminado todas las mascaras.")) {
            finishCancelledDrawing("Serie de mascaras validas finalizada.");
            return;
        }
        if (!isAreaSelection()) {
            showMessage("Mascara no registrada", "La seleccion actual no es un area valida. Vuelve a dibujarla.");
            continue;
        }

        maskCounter++;
        id = "MASK_" + IJ.pad(maskCounter, 3);
        snapshotCurrentView();
        Roi.setName(id);
        Roi.setGroup(8);
        Roi.setFillColor("#1800ffff");
        Roi.setStrokeColor("cyan");
        Roi.setUnscalableStrokeWidth(2);
        setCommonObjectProperties();
        v4StampCurrentRevisionBinding();
        Roi.setProperty("Type", "analysis_mask");
        Roi.setProperty("Mask_id", id);
        Roi.setProperty("Mask_label", seriesLabel);
        roiManager("add");
        idx = roiManager("count")-1;
        syncAreaObjectAtIndex(idx);

        undoKind = "add";
        undoObjectId = id;
        undoDeletedName = "";
        undoAvailable = 1;
        syncAllObjects(0);
        showAllRois();
        restoreViewSnapshot();
        refreshControlPanelStatus();
        clearCurrentSelectionForContinuousDrawing();
        showStatus("Mascara valida anadida: " + id + ". Dibuja la siguiente o pulsa Cancelar.");
    }
}


function addExclusionRoi() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (nImages() <= 0) exit("Abre primero la imagen o collage TEM.");
    run("ROI Manager...");
    areaToolId = chooseAreaToolId("Zonas excluidas - modo continuo");
    reasons = newArray("scale_bar", "text", "vacuum", "contamination", "too_thick", "out_of_focus", "artifact", "other");
    Dialog.create("Zonas excluidas - propiedades de la serie");
    Dialog.addChoice("Motivo comun:", reasons, reasons[0]);
    Dialog.addString("Nota comun:", "", 40);
    Dialog.show();
    seriesReason = Dialog.getChoice();
    seriesNote = Dialog.getString();

    while (1) {
        setTool(areaToolId);
        if (!waitForUserSafe("Zona excluida - modo continuo",
            "Dibuja la siguiente zona no cuantificable.\n"+
            "Pulsa OK para registrarla.\n"+
            "Pulsa Cancelar o Esc cuando hayas terminado todas las exclusiones de este tipo.")) {
            finishCancelledDrawing("Serie de zonas excluidas finalizada.");
            return;
        }
        if (!isAreaSelection()) {
            showMessage("Exclusion no registrada", "La seleccion actual no es un area valida. Vuelve a dibujarla.");
            continue;
        }

        exclusionCounter++;
        id = "EXCL_" + IJ.pad(exclusionCounter, 3);
        snapshotCurrentView();
        Roi.setName(id);
        Roi.setGroup(9);
        Roi.setFillColor("#22ff00ff");
        Roi.setStrokeColor("magenta");
        Roi.setUnscalableStrokeWidth(2);
        setCommonObjectProperties();
        v4StampCurrentRevisionBinding();
        Roi.setProperty("Type", "exclusion");
        Roi.setProperty("Exclusion_id", id);
        Roi.setProperty("Exclusion_reason", seriesReason);
        Roi.setProperty("Notes", seriesNote);
        roiManager("add");
        idx = roiManager("count")-1;
        syncAreaObjectAtIndex(idx);

        undoKind = "add";
        undoObjectId = id;
        undoDeletedName = "";
        undoAvailable = 1;
        syncAllObjects(0);
        showAllRois();
        restoreViewSnapshot();
        refreshControlPanelStatus();
        clearCurrentSelectionForContinuousDrawing();
        showStatus("Zona excluida anadida: " + id + " (" + seriesReason + "). Dibuja la siguiente o pulsa Cancelar.");
    }
}


function addLinearFeatureWithTool(featureType, toolChoice) {
    featureToolPreset = toolChoice;
    addLinearFeature(featureType);
}

function addLinearFeature(featureType) {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (nImages() <= 0) exit("Abre primero la imagen o collage TEM.");
    updateScaleOrExit();
    run("ROI Manager...");
    label = featureTypeLabel(featureType);
    confidenceChoices = newArray("high", "medium", "low");
    toolChoices = newArray("Polilinea", "Mano alzada");
    defaultToolChoice = "Polilinea";
    if (featureToolPreset != "") defaultToolChoice = featureToolPreset;
    Dialog.create(label + " - modo continuo");
    Dialog.addChoice("Herramienta:", toolChoices, defaultToolChoice);
    Dialog.addChoice("Confianza comun:", confidenceChoices, confidenceChoices[0]);
    Dialog.addString("Nota comun:", "", 40);
    Dialog.addMessage("Dibuja tantas lineas como necesites. Pulsa Cancelar en la ventana de dibujo para finalizar la serie.");
    Dialog.show();
    seriesToolChoice = Dialog.getChoice();
    seriesConfidence = Dialog.getChoice();
    seriesFeatureNote = Dialog.getString();
    featureToolPreset = "";

    while (1) {
        if (seriesToolChoice == "Mano alzada") setTool("freeline");
        else setTool("polyline");
        if (!waitForUserSafe("Dibujar " + label + " - modo continuo",
            "Dibuja la siguiente linea sobre " + label + ".\n"+
            "Polilinea: clicks sucesivos y doble click. Mano alzada: arrastra.\n"+
            "Pulsa OK para registrarla o Cancelar/Esc para terminar la serie.")) {
            finishCancelledDrawing("Serie de " + label + " finalizada.");
            return;
        }
        st = selectionType;
        if (st != 5 && st != 6 && st != 7) {
            showMessage("Linea no registrada", "La seleccion actual no es una linea valida. Vuelve a dibujarla.");
            continue;
        }
        getSelectionCoordinates(xs, ys);
        if (xs.length < 2) {
            showMessage("Linea no registrada", "La linea necesita al menos dos puntos.");
            continue;
        }

        id = "";
        if (featureType == "grain_boundary") {
            grainBoundaryCounter++;
            id = "GB_" + IJ.pad(grainBoundaryCounter, 4);
        } else if (featureType == "dislocation") {
            dislocationCounter++;
            id = "DISL_" + IJ.pad(dislocationCounter, 4);
        } else {
            interfaceCounter++;
            id = "INT_" + IJ.pad(interfaceCounter, 4);
        }

        snapshotCurrentView();
        Roi.setName(id);
        Roi.setGroup(lightGroupForFeatureType(featureType));
        setCommonObjectProperties();
        v4StampCurrentRevisionBinding();
        Roi.setProperty("Type", featureType);
        Roi.setProperty("Feature_id", id);
        Roi.setProperty("Confidence", seriesConfidence);
        Roi.setProperty("Notes", seriesFeatureNote);
        applyFeatureStyle(featureType);
        roiManager("add");
        idx = roiManager("count")-1;
        syncLinearFeatureAtIndex(idx);

        undoKind = "add";
        undoObjectId = id;
        undoDeletedName = "";
        undoAvailable = 1;
        showAllRois();
        restoreViewSnapshot();
        updateSessionMetadataRoi();
        refreshControlPanelStatus();
        clearCurrentSelectionForContinuousDrawing();
        showStatus(label + " registrada: " + id + ". Dibuja la siguiente o pulsa Cancelar.");
    }
}


function drawAreaSelection(title, message) {
    choices = newArray("Rectangulo", "Poligono", "Mano alzada");
    Dialog.create(title);
    Dialog.addChoice("Herramienta:", choices, choices[0]);
    Dialog.show();
    choice = Dialog.getChoice();
    tool = "rectangle";
    if (choice == "Poligono") tool = "polygon";
    if (choice == "Mano alzada") tool = "freehand";
    setTool(tool);
    if (!waitForUserSafe(title, message)) {
        finishCancelledDrawing(title + " cancelado.");
        return 0;
    }
    return 1;
}

function isAreaSelection() {
    st = selectionType;
    if (st == 0 || st == 1 || st == 2 || st == 3 || st == 4 || st == 9) return 1;
    return 0;
}

function syncAreaObjectAtIndex(idx) {
    safeRoiSelect(idx); type=currentRoiType(); if(type!="panel"&&type!="analysis_mask"&&type!="exclusion")return;
    getStatistics(areaCurrent);areaNm2=areaCurrent*unitFactorNm*unitFactorNm;Roi.getFloatBounds(x,y,w,h);setCommonObjectProperties();Roi.setProperty("Area_nm2",d2s(areaNm2,6));Roi.setProperty("Area_um2",d2s(areaNm2/1000000,9));Roi.setProperty("Bounds_x_px",d2s(x,6));Roi.setProperty("Bounds_y_px",d2s(y,6));Roi.setProperty("Bounds_width_px",d2s(w,6));Roi.setProperty("Bounds_height_px",d2s(h,6));if(type=="analysis_mask")Roi.setGroup(8);else if(type=="exclusion")Roi.setGroup(9);applyAreaObjectStyle(type);roiManager("update");
}


function syncLinearFeatureAtIndex(idx) {
    safeRoiSelect(idx);type=currentRoiType();if(!isLinearFeatureType(type))return;Roi.getCoordinates(xs,ys);lengthNm=polylineLengthNm(xs,ys);setCommonObjectProperties();Roi.setProperty("Point_count",d2s(xs.length,0));Roi.setProperty("Length_nm",d2s(lengthNm,6));Roi.setProperty("Length_um",d2s(lengthNm/1000,9));Roi.setGroup(lightGroupForFeatureType(type));applyFeatureStyle(type);roiManager("update");
}


function syncDislocationLoopAtIndex(idx) {
    safeRoiSelect(idx);
    if (currentRoiType() != "dislocation_loop") return;
    setCommonObjectProperties();
    v4SetGeometryProperties();
    Roi.setProperty("Closed_contour", "1");
    Roi.setProperty("Modified_time_ms", d2s(getTime(),0));
    applyLoopStyle();
    roiManager("update");
}

function panelForPoint(x, y) {
    // Updates the single effective owner plus the geometric coverage count.
    // Panel_match_count now means effective assignments (0/1); overlaps are
    // diagnosed separately and resolved by certified SVG z_order/ownership.
    n = roiManager("count");
    bestOrder = -1e30;
    panelLastId = "";
    panelLastSource = "";
    panelLastMatchCount = 0;
    panelLastCoverageCount = 0;
    panelLastOwnerCode = 0;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        type = currentRoiType();
        if (type == "panel" && Roi.contains(round(x), round(y))) {
            panelLastCoverageCount++;
            order = propNumber("Panel_order", 0);
            if (order >= bestOrder) {
                bestOrder = order;
                panelName = Roi.getName;
                panelLastId = propString("Panel_id", panelName);
                panelLastSource = propString("Source_filename", "");
                panelLastOwnerCode = round(propNumber("Owner_code", 0));
            }
        }
    }
    if (panelLastId != "") panelLastMatchCount = 1;
    return panelLastMatchCount;
}

function v51PanelBoundaryInfo(idx) {
    // Returns crosses_boundary, distinct_positive_owners, touches_background.
    // Java inspection avoids changing the active ROI while sampling its edge.
    js = "var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),out='0,0,0';if(rm!=null&&" + idx + ">=0&&" + idx + "<rm.getCount()){var rois=rm.getRoisAsArray(),target=rois[" + idx + "],panels=[];function typ(r){var t=r.getProperty('Type');if(t==null||String(t)=='')t=r.getProperty('Object_type');return t==null?'':String(t);}for(var i=0;i<rois.length;i++)if(typ(rois[i])=='panel')panels.push(rois[i]);function owner(x,y){var best=-1e300,code=0;for(var j=0;j<panels.length;j++){var p=panels[j];if(p.contains(Math.round(x),Math.round(y))){var z=parseFloat(String(p.getProperty('Panel_order')));if(isNaN(z))z=0;if(z>=best){best=z;var c=parseInt(String(p.getProperty('Owner_code')),10);code=isNaN(c)?j+1:c;}}}return code;}var seen={},positive=0,bg=false,b=target.getFloatBounds(),c=owner(b.x+b.width/2,b.y+b.height/2);if(c>0)seen[c]=1;else bg=true;var fp=target.getFloatPolygon();if(fp!=null&&fp.npoints>0){var step=Math.max(1,Math.floor(fp.npoints/512));for(var k=0;k<fp.npoints;k+=step){var o=owner(fp.xpoints[k],fp.ypoints[k]);if(o>0)seen[o]=1;else bg=true;}}for(var key in seen)if(seen.hasOwnProperty(key))positive++;var cross=(positive>1||(positive>0&&bg))?1:0;out=cross+','+positive+','+(bg?1:0);}String(out);";
    return "" + eval("js", js);
}

function pointValidity(x, y) {
    if (lightUseWholeImage == 1) {
        fastExclusionCount = countTypeFast("exclusion");
        if (fastExclusionCount == 0) {
            pointValidityReason = "";
            return 1;
        }
    }
    n=roiManager("count");maskCount=0;insideMask=0;insideExclusion=0;reason="";
    for(i=0;i<n;i++){
        safeRoiSelect(i);type=currentRoiType();
        if(type=="analysis_mask"&&!lightUseWholeImage){
            maskCount++;
            if(Roi.contains(round(x),round(y)))insideMask=1;
        }else if(type=="exclusion"){
            if(Roi.contains(round(x),round(y))){insideExclusion=1;reason=propString("Exclusion_reason","excluded_region");}
        }
    }
    if(maskCount>0&&!insideMask){pointValidityReason="outside_analysis_mask";return 0;}
    if(insideExclusion){pointValidityReason=reason;return 0;}
    pointValidityReason="";return 1;
}

function cavityIntersectsInvalidRegion(cx, cy, rx, ry) {
    if (lightUseWholeImage == 1) {
        fastExclusionCount = countTypeFast("exclusion");
        if (fastExclusionCount == 0) return 0;
    }
    if(!pointValidity(cx,cy))return 0;
    samples=24;
    for(k=0;k<samples;k++){
        theta=2*PI_VAL*k/samples;
        px=cx+rx*cos(theta);py=cy+ry*sin(theta);
        if(!pointValidity(px,py))return 1;
    }
    return 0;
}

function distanceToNearestFeatureNm(x, y, featureType) {
    featureCountFast = countTypeFast(featureType);
    if (featureCountFast == 0) return NaN;
    n = roiManager("count");
    best = NaN;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        type = currentRoiType();
        if (type == featureType) {
            Roi.getCoordinates(xs, ys);
            d = pointToPolylineDistanceNm(x, y, xs, ys);
            if (isNaN(best) || d < best) best = d;
        }
    }
    return best;
}

function pointToPolylineDistanceNm(x, y, xs, ys) {
    if (xs.length < 2) return NaN;
    xnm = x*nmPerPixelX;
    ynm = y*nmPerPixelY;
    best = 1e300;
    for (j=0; j<xs.length-1; j++) {
        x1 = xs[j]*nmPerPixelX;
        y1 = ys[j]*nmPerPixelY;
        x2 = xs[j+1]*nmPerPixelX;
        y2 = ys[j+1]*nmPerPixelY;
        vx = x2-x1;
        vy = y2-y1;
        l2 = vx*vx+vy*vy;
        if (l2 <= 0) continue;
        t = ((xnm-x1)*vx+(ynm-y1)*vy)/l2;
        if (t < 0) t = 0;
        if (t > 1) t = 1;
        qx = x1+t*vx;
        qy = y1+t*vy;
        d2 = (xnm-qx)*(xnm-qx)+(ynm-qy)*(ynm-qy);
        if (d2 < best) best = d2;
    }
    if (best >= 1e299) return NaN;
    return sqrt(best);
}

function polylineLengthNm(xs, ys) {
    if (xs.length < 2) return 0;
    sum = 0;
    for (j=0; j<xs.length-1; j++) {
        dx = (xs[j+1]-xs[j])*nmPerPixelX;
        dy = (ys[j+1]-ys[j])*nmPerPixelY;
        sum = sum+sqrt(dx*dx+dy*dy);
    }
    return sum;
}

// -----------------------------------------------------------------------------
// R7 prepared-state cache and batch geometry context
// -----------------------------------------------------------------------------

function lightInvalidateAnalysisCache() {
    lightPreparedFingerprint = "";
    lightPreparedAtMs = 0;
    lightLastPreparationReused = 0;
    lightAreaFingerprint = "";
    lightAreaComputationMode = "not_calculated";
    lightAreaComputationDurationMs = 0;
}

function lightAnalysisInputFingerprint() {
    if (nImages() <= 0) return "";
    updateScaleMaybe();
    config = lightImageId + "|" + lightSourceSha256 + "|" + getWidth() + "x" + getHeight();
    config = config + "|scale=" + d2s(nmPerPixelX,12) + "," + d2s(nmPerPixelY,12);
    config = config + "|mode=" + lightImageMode + "|whole=" + lightUseWholeImage;
    config = config + "|surface=" + surfaceDefined + "," + surfaceSideDefined + "," + d2s(surfaceMaterialSign,0);
    config = config + "|bands=" + d2s(bandNm,9) + "," + bandCount + "," + excludeNegativeDepth;
    config = config + "|include_uncertain=" + lightIncludeUncertain;
    config = config + "|duplicates=" + d2s(duplicateCenterTolPx,6) + "," + d2s(duplicateRelativeTol,6) + "," + d2s(duplicateDiameterTolFraction,6);
    configJs = jsEscape(config);
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,MD=Packages.java.security.MessageDigest,CS=Packages.java.nio.charset.StandardCharsets,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),parts=['" + configJs + "'];function val(r,k){var v=r.getProperty(k);return v==null?'':String(v);}function typ(r){var t=val(r,'Type');if(t=='')t=val(r,'Object_type');return t;}function num(v){var n=Number(v);return isFinite(n)?n.toFixed(6):String(v);}for(var i=0;i<rois.length;i++){var r=rois[i],b=r.getFloatBounds(),fp=r.getFloatPolygon(),name=String(r.getName()||'');parts.push('R',i,name,typ(r),num(b.x),num(b.y),num(b.width),num(b.height),val(r,'Cavity_class'),val(r,'Manual_excluded'),val(r,'Measurement_source'),val(r,'Exclusion_reason'),val(r,'Mask_label'),val(r,'Material_side_sign'));if(fp!=null){parts.push('P',fp.npoints);for(var k=0;k<fp.npoints;k++)parts.push(num(fp.xpoints[k]),num(fp.ypoints[k]));}}var bytes=MD.getInstance('SHA-256').digest(new java.lang.String(parts.join('|')).getBytes(CS.UTF_8)),out='';for(var j=0;j<bytes.length;j++){var v=Number(bytes[j])&255;out+=(v<16?'0':'')+v.toString(16);}return out;})();";
    result = "" + eval("js", js);
    return result;
}

function lightAreaInputFingerprint() {
    if (nImages() <= 0) return "";
    updateScaleMaybe();
    config = lightImageId + "|" + getWidth() + "x" + getHeight();
    config = config + "|scale=" + d2s(nmPerPixelX,12) + "," + d2s(nmPerPixelY,12);
    config = config + "|mode=" + lightImageMode + "|whole=" + lightUseWholeImage;
    config = config + "|surface=" + surfaceDefined + "," + surfaceSideDefined + "," + d2s(surfaceMaterialSign,0);
    config = config + "|exclude_negative=" + excludeNegativeDepth;
    configJs = jsEscape(config);
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,MD=Packages.java.security.MessageDigest,CS=Packages.java.nio.charset.StandardCharsets,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),parts=['" + configJs + "'];function val(r,k){var v=r.getProperty(k);return v==null?'':String(v);}function typ(r){var t=val(r,'Type');if(t=='')t=val(r,'Object_type');return t;}function num(v){var n=Number(v);return isFinite(n)?n.toFixed(6):String(v);}for(var i=0;i<rois.length;i++){var r=rois[i],t=typ(r);if(t!='analysis_mask'&&t!='exclusion'&&t!='surface_reference')continue;var b=r.getFloatBounds(),fp=r.getFloatPolygon();parts.push('R',i,String(r.getName()||''),t,num(b.x),num(b.y),num(b.width),num(b.height),val(r,'Exclusion_reason'),val(r,'Material_side_sign'));if(fp!=null){parts.push('P',fp.npoints);for(var k=0;k<fp.npoints;k++)parts.push(num(fp.xpoints[k]),num(fp.ypoints[k]));}}var bytes=MD.getInstance('SHA-256').digest(new java.lang.String(parts.join('|')).getBytes(CS.UTF_8)),out='';for(var j=0;j<bytes.length;j++){var v=Number(bytes[j])&255;out+=(v<16?'0':'')+v.toString(16);}return out;})();";
    result = "" + eval("js", js);
    return result;
}

function lightClearCavityContextCache() {
    lightCavityContextActive = 0;
    lightCtxValid = newArray(0);
    lightCtxEdgeMask = newArray(0);
    lightCtxReason = newArray(0);
    lightCtxDistanceGbNm = newArray(0);
    lightCtxDistanceDislocationNm = newArray(0);
    lightCtxDistanceInterfaceNm = newArray(0);
}

function lightBuildCavityContextCache() {
    lightClearCavityContextCache();
    run("ROI Manager...");
    totalRois = roiManager("count");
    lightCtxValid = newArray(totalRois);
    lightCtxEdgeMask = newArray(totalRois);
    lightCtxReason = newArray(totalRois);
    lightCtxDistanceGbNm = newArray(totalRois);
    lightCtxDistanceDislocationNm = newArray(totalRois);
    lightCtxDistanceInterfaceNm = newArray(totalRois);
    for (ctxInit=0; ctxInit<totalRois; ctxInit++) {
        lightCtxValid[ctxInit] = 1;
        lightCtxEdgeMask[ctxInit] = 0;
        lightCtxReason[ctxInit] = "";
        lightCtxDistanceGbNm[ctxInit] = NaN;
        lightCtxDistanceDislocationNm[ctxInit] = NaN;
        lightCtxDistanceInterfaceNm[ctxInit] = NaN;
    }
    if (totalRois == 0) {
        lightCavityContextActive = 1;
        return 1;
    }
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),sx=" + d2s(nmPerPixelX,12) + ",sy=" + d2s(nmPerPixelY,12) + ",whole=" + lightUseWholeImage + ";function val(r,k){var v=r.getProperty(k);return v==null?'':String(v);}function typ(r){var t=val(r,'Type');if(t=='')t=val(r,'Object_type');return t;}var masks=[],exclusions=[],segments={grain_boundary:[],dislocation:[],interface:[]};for(var i=0;i<rois.length;i++){var r=rois[i],t=typ(r);if(t=='analysis_mask')masks.push(r);else if(t=='exclusion')exclusions.push(r);else if(segments[t]!=null){var fp=r.getFloatPolygon();if(fp!=null)for(var k=0;k<fp.npoints-1;k++)segments[t].push([fp.xpoints[k]*sx,fp.ypoints[k]*sy,fp.xpoints[k+1]*sx,fp.ypoints[k+1]*sy]);}}function insideAny(a,x,y){for(var j=0;j<a.length;j++)if(a[j].contains(Math.round(x),Math.round(y)))return j;return -1;}function validAt(x,y){if(!whole&&masks.length>0&&insideAny(masks,x,y)<0)return [0,'outside_analysis_mask'];var ex=insideAny(exclusions,x,y);if(ex>=0){var reason=val(exclusions[ex],'Exclusion_reason');if(reason=='')reason='excluded_region';return [0,reason];}return [1,''];}function dist(x,y,ss){if(ss.length==0)return NaN;var px=x*sx,py=y*sy,best=1e300;for(var j=0;j<ss.length;j++){var ax=ss[j][0],ay=ss[j][1],bx=ss[j][2],by=ss[j][3],dx=bx-ax,dy=by-ay,l2=dx*dx+dy*dy,u=l2>0?((px-ax)*dx+(py-ay)*dy)/l2:0;if(u<0)u=0;if(u>1)u=1;var nx=ax+u*dx,ny=ay+u*dy,ex=px-nx,ey=py-ny,d2=ex*ex+ey*ey;if(d2<best)best=d2;}return Math.sqrt(best);}function clean(s){return String(s).replace(/[|\\r\\n]/g,'_');}function n(v){return isFinite(v)?String(v):'NaN';}var out=['OK'];for(i=0;i<rois.length;i++){var r=rois[i];if(typ(r)!='cavity')continue;var b=r.getFloatBounds(),cx=b.x+b.width/2,cy=b.y+b.height/2,rx=b.width/2,ry=b.height/2,v=validAt(cx,cy),edge=0;if(v[0]){for(var q=0;q<24;q++){var a=2*Math.PI*q/24;if(!validAt(cx+rx*Math.cos(a),cy+ry*Math.sin(a))[0]){edge=1;break;}}}out.push(i+'|'+v[0]+'|'+edge+'|'+clean(v[1]||'-')+'|'+n(dist(cx,cy,segments.grain_boundary))+'|'+n(dist(cx,cy,segments.dislocation))+'|'+n(dist(cx,cy,segments.interface)));}return out.join('\\n');})();";
    result = "" + eval("js", js);
    rows = split(result, "\n");
    if (rows.length < 1) return 0;
    headerValue = rows[0];
    if (headerValue != "OK") return 0;
    for (ctxRow=1; ctxRow<rows.length; ctxRow++) {
        rowText = rows[ctxRow];
        if (rowText == "") continue;
        fields = split(rowText, "|");
        if (fields.length < 7) continue;
        idxValue = round(parseFloat(fields[0]));
        insideRange = 0;
        if (idxValue >= 0) {
            if (idxValue < totalRois) insideRange = 1;
        }
        if (insideRange == 0) continue;
        lightCtxValid[idxValue] = round(parseFloat(fields[1]));
        lightCtxEdgeMask[idxValue] = round(parseFloat(fields[2]));
        reasonValue = fields[3];
        if (reasonValue == "-") reasonValue = "";
        lightCtxReason[idxValue] = reasonValue;
        lightCtxDistanceGbNm[idxValue] = parseFloat(fields[4]);
        lightCtxDistanceDislocationNm[idxValue] = parseFloat(fields[5]);
        lightCtxDistanceInterfaceNm[idxValue] = parseFloat(fields[6]);
    }
    lightCavityContextActive = 1;
    return 1;
}

function lightPrepareAnalysisState(force, verbose) {
    if (nImages() <= 0) return 0;
    startMs = getTime();
    beforeFingerprint = lightAnalysisInputFingerprint();
    canReuse = 0;
    if (force == 0) {
        if (beforeFingerprint != "") {
            if (beforeFingerprint == lightPreparedFingerprint) canReuse = 1;
        }
    }
    if (canReuse == 1) {
        lightLastPreparationReused = 1;
        lightLastPreparationDurationMs = getTime() - startMs;
        lightPreparationCacheHits++;
        if (verbose) showStatus("Estado cuantitativo reutilizado; no se recorrieron de nuevo las cavidades.");
        return 1;
    }
    lightLastPreparationReused = 0;
    showStatus("Actualizando geometria y duplicados en un unico ciclo...");
    syncOk = lightSyncAllObjectsCore(0);
    if (syncOk == 0) return 0;
    lightScanAllDuplicatesCore(0);
    afterFingerprint = lightAnalysisInputFingerprint();
    lightPreparedFingerprint = afterFingerprint;
    lightPreparedAtMs = getTime();
    lightLastPreparationDurationMs = lightPreparedAtMs - startMs;
    lightPreparationRuns++;
    if (verbose) showStatus("Estado cuantitativo preparado en " + d2s(lightLastPreparationDurationMs/1000,2) + " s.");
    return 1;
}

// -----------------------------------------------------------------------------
// Recalculation from current ROI geometry
// -----------------------------------------------------------------------------

function syncAllObjects(verbose) {
    lightSyncAllObjectsCore(verbose);
}

function lightSyncAllObjectsCore(verbose) {
    if (nImages() <= 0) return 0;
    if (v4ProjectLoaded && !v4RequireCurrentRevisionBinding("sincronizar las ROI", verbose)) return 0;
    run("ROI Manager...");
    if (!updateScaleMaybe()) {
        if (verbose) showMessage("Escala no valida", "Define o restaura la escala antes de sincronizar.");
        return 0;
    }
    commitActiveManagedRoi();
    refreshSurfaceGeometryFromRoi();
    ensureObjectIds();
    lightBuildCavityContextCache();

    snapshotCurrentView();
    n = roiManager("count");
    cCav = 0;
    cOther = 0;
    for (i=0; i<n; i++) {
        if (i % 20 == 0) showProgress(i, max2(n,1));
        safeRoiSelect(i);
        type = currentRoiType();
        if (type == "cavity") {
            syncCavityAtIndex(i);
            cCav++;
        } else if (isLinearFeatureType(type)) {
            syncLinearFeatureAtIndex(i);
            cOther++;
        } else if (type == "dislocation_loop") {
            syncDislocationLoopAtIndex(i);
            cOther++;
        } else if (type == "panel" || type == "analysis_mask" || type == "exclusion") {
            syncAreaObjectAtIndex(i);
            cOther++;
        } else if (type == "scale_reference") {
            syncScaleReferenceAtIndex(i);
        } else if (type == "surface_reference") {
            syncSurfaceReferenceAtIndex(i);
        }
    }
    showProgress(1,1);
    if (scaleDefined) rebuildScaleLabelFromReference(0);
    updateSessionMetadataRoi();
    showAllRois();
    restoreViewSnapshot();
    lightClearCavityContextCache();
    refreshControlPanelStatus();
    if (verbose) showStatus("Sincronizadas " + cCav + " cavidades y " + cOther + " ROIs auxiliares en un solo recorrido.");
    return 1;
}

function syncCavityAtIndex(idx) {
    safeRoiSelect(idx); if (!currentRoiIsCavity()) return;
    id = Roi.getProperty("Cavity_id"); if (id == "") { cavityCounter++; id = "CAV_" + IJ.pad(cavityCounter,6); }
    serial = round(propNumber("Cavity_serial", serialFromId(id))); if (serial < 1) serial = serialFromId(id);
    source = propString("Measurement_source", "unknown"); manualExcluded = round(propNumber("Manual_excluded",0));
    duplicateStatus = propString("Duplicate_status","clear"); duplicatePartners = propString("Duplicate_partners","");
    storedCavityClass = propString("Cavity_class","confirmed"); cavityClass = normalizeCavityClass(storedCavityClass); defaultClassLabel = cavityClassLabel(cavityClass); cavityClassLabelValue = propString("Cavity_class_label",defaultClassLabel); cavityConfidence = propString("Cavity_confidence","high");
    Roi.getFloatBounds(x,y,w,h); cx=x+w/2; cy=y+h/2; axisXNm=w*nmPerPixelX; axisYNm=h*nmPerPixelY; majorNm=max2(axisXNm,axisYNm); minorNm=min2(axisXNm,axisYNm); eqDnm=sqrt(axisXNm*axisYNm); if(eqDnm<=0)return; aspect=NaN;if(minorNm>0)aspect=majorNm/minorNm;areaNm2=PI_VAL*axisXNm*axisYNm/4;sphereVolumeNm3=PI_VAL*pow(eqDnm,3)/6;geometryKind="circle";if(aspect>1.02)geometryKind="ellipse";
    depthAbs=NaN;depthSigned=NaN;arcNm=NaN;nearestX=NaN;nearestY=NaN;tangentAngle=NaN;bandIndex=-1;
    if(lightImageMode=="with_surface"&&surfaceDefined&&computeSurfaceMetrics(cx,cy)){depthAbs=surfaceLastDistanceNm;depthSigned=surfaceLastSignedDistanceNm;arcNm=surfaceLastArcNm;nearestX=surfaceLastNearestXpx;nearestY=surfaceLastNearestYpx;tangentAngle=surfaceLastTangentAngleDeg;depthForBand=depthSigned;if(!surfaceSideDefined)depthForBand=depthAbs;if(depthForBand>=0)bandIndex=floor(depthForBand/bandNm);}
    useCachedContext=0;
    if(lightCavityContextActive==1){
        if(idx>=0){
            if(idx<lightCtxValid.length)useCachedContext=1;
        }
    }
    if(useCachedContext==1){
        validCenter=round(lightCtxValid[idx]);
        invalidReason=lightCtxReason[idx];
        edgeMask=round(lightCtxEdgeMask[idx]);
        distanceGbNm=lightCtxDistanceGbNm[idx];
        distanceDislocationNm=lightCtxDistanceDislocationNm[idx];
        distanceInterfaceNm=lightCtxDistanceInterfaceNm[idx];
    }else{
        validCenter=pointValidity(cx,cy);
        invalidReason=pointValidityReason;
        edgeMask=0;
        if(validCenter)edgeMask=cavityIntersectsInvalidRegion(cx,cy,w/2,h/2);
        distanceGbNm=distanceToNearestFeatureNm(cx,cy,"grain_boundary");
        distanceDislocationNm=distanceToNearestFeatureNm(cx,cy,"dislocation");
        distanceInterfaceNm=distanceToNearestFeatureNm(cx,cy,"interface");
    }
    edgeImage=0;if(x<=0||y<=0||x+w>=getWidth()||y+h>=getHeight())edgeImage=1;edgeIntersect=max2(edgeImage,edgeMask);
    includeStats=1;exclusionReason="";if(!validCenter){includeStats=0;exclusionReason=invalidReason;}if(manualExcluded){includeStats=0;exclusionReason="manual_exclusion";}if(lightImageMode=="with_surface"&&excludeNegativeDepth&&!isNaN(depthSigned)&&depthSigned<0){includeStats=0;exclusionReason="negative_depth";}
    classAllowed=1;if(cavityClass=="possible_artifact")classAllowed=0;if(cavityClass=="uncertain"&&!lightIncludeUncertain)classAllowed=0;countValid=includeStats&&classAllowed;sizeValid=countValid&&!edgeIntersect;
    cavityGroup=lightGroupForCavityClass(cavityClass);if(manualExcluded)cavityGroup=3;
    safeRoiSelect(idx);Roi.setName(id);Roi.setGroup(cavityGroup);Roi.setProperty("Type","cavity");Roi.setProperty("Cavity_id",id);Roi.setProperty("Cavity_serial",d2s(serial,0));Roi.setProperty("Measurement_source",source);Roi.setProperty("Cavity_class",cavityClass);Roi.setProperty("Cavity_class_label",cavityClassLabelValue);Roi.setProperty("Cavity_confidence",cavityConfidence);Roi.setProperty("Geometry_kind",geometryKind);
    Roi.setProperty("Center_x_px",d2s(cx,6));Roi.setProperty("Center_y_px",d2s(cy,6));Roi.setProperty("Center_x_nm",d2s(cx*nmPerPixelX,6));Roi.setProperty("Center_y_nm",d2s(cy*nmPerPixelY,6));Roi.setProperty("Axis_x_nm",d2s(axisXNm,6));Roi.setProperty("Axis_y_nm",d2s(axisYNm,6));Roi.setProperty("Major_axis_nm",d2s(majorNm,6));Roi.setProperty("Minor_axis_nm",d2s(minorNm,6));Roi.setProperty("Equivalent_diameter_nm",d2s(eqDnm,6));Roi.setProperty("Diameter_nm",d2s(eqDnm,6));Roi.setProperty("Aspect_ratio",d2s(aspect,6));Roi.setProperty("Cavity_area_nm2",d2s(areaNm2,6));Roi.setProperty("Estimated_spherical_volume_nm3",d2s(sphereVolumeNm3,6));Roi.setProperty("Bubble_area_nm2",d2s(areaNm2,6));Roi.setProperty("Bubble_volume_nm3",d2s(sphereVolumeNm3,6));
    Roi.setProperty("Depth_absolute_nm",d2s(depthAbs,6));Roi.setProperty("Signed_depth_nm",d2s(depthSigned,6));Roi.setProperty("Depth_nm",d2s(depthSigned,6));Roi.setProperty("Surface_position_nm",d2s(arcNm,6));Roi.setProperty("Surface_nearest_x_px",d2s(nearestX,6));Roi.setProperty("Surface_nearest_y_px",d2s(nearestY,6));Roi.setProperty("Surface_tangent_angle_deg",d2s(tangentAngle,6));Roi.setProperty("Band_index",d2s(bandIndex,0));if(bandIndex>=0){Roi.setProperty("Band_low_nm",d2s(bandIndex*bandNm,6));Roi.setProperty("Band_high_nm",d2s((bandIndex+1)*bandNm,6));}else{Roi.setProperty("Band_low_nm","NaN");Roi.setProperty("Band_high_nm","NaN");}Roi.setProperty("Band_width_nm",d2s(bandNm,6));
    Roi.setProperty("Inside_analysis_mask",d2s(validCenter,0));Roi.setProperty("Position_valid",d2s(validCenter,0));Roi.setProperty("Exclusion_reason",exclusionReason);Roi.setProperty("Manual_excluded",d2s(manualExcluded,0));Roi.setProperty("Include_in_statistics",d2s(countValid,0));Roi.setProperty("Count_valid",d2s(countValid,0));Roi.setProperty("Size_valid",d2s(sizeValid,0));Roi.setProperty("Include_in_size_statistics",d2s(sizeValid,0));Roi.setProperty("Edge_intersecting",d2s(edgeIntersect,0));Roi.setProperty("Panel_id","");Roi.setProperty("Source_filename",imageFileName);Roi.setProperty("Panel_match_count","0");Roi.setProperty("Effective_owner_code","0");Roi.setProperty("Geometric_coverage_count","0");Roi.setProperty("Crosses_panel_boundary","0");Roi.setProperty("Distinct_panel_owners","0");Roi.setProperty("Touches_panel_background","0");Roi.setProperty("Panel_boundary_review_required","0");Roi.setProperty("Duplicate_status",duplicateStatus);Roi.setProperty("Duplicate_partners",duplicatePartners);Roi.setProperty("Distance_to_grain_boundary_nm",d2s(distanceGbNm,6));Roi.setProperty("Distance_to_dislocation_nm",d2s(distanceDislocationNm,6));Roi.setProperty("Distance_to_interface_nm",d2s(distanceInterfaceNm,6));setCommonObjectProperties();applyCavityStyle();roiManager("update");
}


function syncScaleReferenceAtIndex(idx) {
    safeRoiSelect(idx);
    getLine(x1, y1, x2, y2, lw);
    if (x1 == -1) return;
    dpx = sqrt((x2-x1)*(x2-x1)+(y2-y1)*(y2-y1));
    known = propNumber("Known_length_nm", scaleKnownNm);
    if (dpx > 0 && known > 0) {
        scaleKnownNm = known;
        Roi.setProperty("Line_length_px", d2s(dpx, 9));
        Roi.setProperty("Scale_nm_per_px", d2s(known/dpx, 12));
        Roi.setProperty("X1_px", d2s(x1, 6));
        Roi.setProperty("Y1_px", d2s(y1, 6));
        Roi.setProperty("X2_px", d2s(x2, 6));
        Roi.setProperty("Y2_px", d2s(y2, 6));
    }
    Roi.setStrokeColor("yellow");
    Roi.setUnscalableStrokeWidth(3);
    roiManager("update");
}

function syncSurfaceReferenceAtIndex(idx) {
    safeRoiSelect(idx);
    Roi.getCoordinates(xs, ys);
    if (xs.length < 2) return;
    Roi.setProperty("Type", "surface_reference");
    Roi.setProperty("Surface_side_defined", d2s(surfaceSideDefined, 0));
    Roi.setProperty("Material_point_x_px", d2s(surfaceMaterialX, 6));
    Roi.setProperty("Material_point_y_px", d2s(surfaceMaterialY, 6));
    Roi.setProperty("Material_side_sign", d2s(surfaceMaterialSign, 0));
    Roi.setProperty("Point_count", d2s(xs.length, 0));
    Roi.setProperty("Length_nm", d2s(polylineLengthNm(xs, ys), 6));
    Roi.setStrokeColor("cyan");
    Roi.setUnscalableStrokeWidth(3);
    roiManager("update");
    surfaceX = xs;
    surfaceY = ys;
}

// -----------------------------------------------------------------------------
// Duplicate detection
// -----------------------------------------------------------------------------

function duplicatePairLikely(x1, y1, d1px, d1nm, x2, y2, d2px, d2nm) {
    centerDist = sqrt((x1-x2)*(x1-x2)+(y1-y2)*(y1-y2));
    tol = max2(duplicateCenterTolPx, duplicateRelativeTol*min2(d1px, d2px));
    maxD = max2(d1nm, d2nm);
    sizeDiff = 0;
    if (maxD > 0) sizeDiff = abs(d1nm-d2nm)/maxD;
    if (centerDist <= tol && sizeDiff <= duplicateDiameterTolFraction) return 1;
    // Exact/near-exact center is suspicious even if the measured diameters differ.
    if (centerDist <= duplicateCenterTolPx*0.5) return 1;
    return 0;
}

function checkNewCavityForDuplicates(newIdx) {
    safeRoiSelect(newIdx);
    if (!currentRoiIsCavity()) return;
    Roi.getFloatBounds(x, y, w, h);
    cx = x+w/2;
    cy = y+h/2;
    dpx = sqrt(w*h);
    dnm = propNumber("Equivalent_diameter_nm", sqrt((w*nmPerPixelX)*(h*nmPerPixelY)));
    id = cavityIdCurrent();
    partners = "";
    n = roiManager("count");
    for (i=0; i<n; i++) {
        if (i == newIdx) continue;
        safeRoiSelect(i);
        if (currentRoiIsCavity()) {
            Roi.getFloatBounds(x2, y2, w2, h2);
            cx2 = x2+w2/2;
            cy2 = y2+h2/2;
            d2px = sqrt(w2*h2);
            d2nm = propNumber("Equivalent_diameter_nm", sqrt((w2*nmPerPixelX)*(h2*nmPerPixelY)));
            if (duplicatePairLikely(cx, cy, dpx, dnm, cx2, cy2, d2px, d2nm)) {
                id2 = cavityIdCurrent();
                partners = appendToken(partners, id2);
                old = propString("Duplicate_partners", "");
                safeRoiSelect(i);
                Roi.setProperty("Duplicate_status", "suspect");
                Roi.setProperty("Duplicate_partners", appendToken(old, id));
                applyCavityStyle();
                roiManager("update");
            }
        }
    }
    safeRoiSelect(newIdx);
    if (partners != "") {
        Roi.setProperty("Duplicate_status", "suspect");
        Roi.setProperty("Duplicate_partners", partners);
        applyCavityStyle();
        roiManager("update");
        showStatus(id + " coincide con posibles duplicados: " + partners + ". Se conservan para revision.");
    }
}

function scanAllDuplicates(verbose) {
    if (nImages() <= 0) return;
    if (v4ProjectLoaded && !v4RequireCurrentRevisionBinding("buscar duplicados", verbose)) return;
    syncOk = lightSyncAllObjectsCore(0);
    if (syncOk == 0) return;
    lightScanAllDuplicatesCore(verbose);
    lightPreparedFingerprint = lightAnalysisInputFingerprint();
    lightPreparedAtMs = getTime();
    lightLastPreparationReused = 0;
}

function lightScanAllDuplicatesCore(verbose) {
    nC = countTypeFast("cavity");
    resetNamedTable("Duplicate_Review");
    if (nC < 1) {
        if (verbose) showMessage("Duplicados", "No hay cavidades.");
        return 0;
    }

    idxs = newArray(nC);
    ids = newArray(nC);
    xs = newArray(nC);
    ys = newArray(nC);
    dpxs = newArray(nC);
    dnms = newArray(nC);
    partners = newArray(nC);
    k = 0;
    n = roiManager("count");
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        if (currentRoiIsCavity()) {
            Roi.getFloatBounds(x, y, w, h);
            idxs[k] = i;
            ids[k] = cavityIdCurrent();
            xs[k] = x+w/2;
            ys[k] = y+h/2;
            dpxs[k] = sqrt(w*h);
            dnms[k] = propNumber("Equivalent_diameter_nm", sqrt((w*nmPerPixelX)*(h*nmPerPixelY)));
            partners[k] = "";
            k++;
        }
    }

    pairCount = 0;
    row = 0;
    for (a=0; a<nC; a++) {
        if (a % 25 == 0) showProgress(a, max2(nC,1));
        for (b=a+1; b<nC; b++) {
            if (duplicatePairLikely(xs[a], ys[a], dpxs[a], dnms[a], xs[b], ys[b], dpxs[b], dnms[b])) {
                partners[a] = appendToken(partners[a], ids[b]);
                partners[b] = appendToken(partners[b], ids[a]);
                centerDistPx = sqrt((xs[a]-xs[b])*(xs[a]-xs[b])+(ys[a]-ys[b])*(ys[a]-ys[b]));
                centerDistNm = sqrt(pow((xs[a]-xs[b])*nmPerPixelX,2)+pow((ys[a]-ys[b])*nmPerPixelY,2));
                Table.set("cavity_1", row, ids[a], "Duplicate_Review");
                Table.set("cavity_2", row, ids[b], "Duplicate_Review");
                Table.set("center_distance_px", row, centerDistPx, "Duplicate_Review");
                Table.set("center_distance_nm", row, centerDistNm, "Duplicate_Review");
                Table.set("diameter_1_nm", row, dnms[a], "Duplicate_Review");
                Table.set("diameter_2_nm", row, dnms[b], "Duplicate_Review");
                Table.set("diameter_difference_percent", row, 100*abs(dnms[a]-dnms[b])/max2(dnms[a],dnms[b]), "Duplicate_Review");
                row++;
                pairCount++;
            }
        }
    }

    for (a=0; a<nC; a++) {
        safeRoiSelect(idxs[a]);
        if (partners[a] == "") {
            Roi.setProperty("Duplicate_status", "clear");
            Roi.setProperty("Duplicate_partners", "");
        } else {
            Roi.setProperty("Duplicate_status", "suspect");
            Roi.setProperty("Duplicate_partners", partners[a]);
        }
        applyCavityStyle();
        roiManager("update");
    }
    showProgress(1,1);
    showAllRois();
    updateSessionMetadataRoi();
    refreshControlPanelStatus();
    if (verbose) showMessage("Revision de duplicados", "Pares sospechosos: " + pairCount + "\n\nSe han marcado en magenta, pero no se ha borrado ni excluido ninguna cavidad. Revisa cada par y conserva ambas si representan un solapamiento o alineamiento real.");
    return pairCount;
}

function computeBandAreasSampled() {
    lastAreaSamplingStepPx = NaN;
    lastValidAreaNm2 = NaN;
    lastBandAreasNm2 = newArray(bandCount);
    if (!surfaceDefined) return 0;
    updateScaleOrExit();

    js = "var IJ=Packages.ij.IJ;";
    js = js + "var RM=Packages.ij.plugin.frame.RoiManager;";
    js = js + "var OUT='ERROR|unknown';var imp=IJ.getImage();var rm=RM.getInstance2();if(imp==null||rm==null){OUT='ERROR|no image or ROI manager';}else{";
    js = js + "var rois=rm.getRoisAsArray();var masks=[];var panels=[];var exclusions=[];var surface=null;";
    js = js + "function typ(r){var p=r.getProperty('Type');return p==null?'':String(p);}";
    js = js + "for(var i=0;i<rois.length;i++){var t=typ(rois[i]);var n=String(rois[i].getName());if(t=='analysis_mask')masks.push(rois[i]);else if(t=='panel')panels.push(rois[i]);else if(t=='exclusion')exclusions.push(rois[i]);else if(t=='surface_reference'||t=='surface'||n.indexOf('SURFACE_REFERENCE')==0)surface=rois[i];}";
    js = js + "if(surface==null){OUT='ERROR|surface missing';}else{";
    js = js + "var requirePanels=" + d2s(usePanelsAsMask || v4PanelQuantitativeReady,0) + ";";
    js = js + "function anyContains(arr,x,y){for(var j=0;j<arr.length;j++){if(arr[j].contains(x,y))return true;}return false;}";
    js = js + "var fp=surface.getFloatPolygon();var sx=fp.xpoints;var sy=fp.ypoints;var sn=fp.npoints;";
    js = js + "var pw=" + d2s(nmPerPixelX,12) + ";var ph=" + d2s(nmPerPixelY,12) + ";var sideDefined=" + d2s(surfaceSideDefined,0) + ";var matSign=" + d2s(surfaceMaterialSign,0) + ";";
    js = js + "function sdist(px,py){var xn=px*pw,yn=py*ph;var best=1e300,bestCross=0;for(var q=0;q<sn-1;q++){var x1=sx[q]*pw,y1=sy[q]*ph,x2=sx[q+1]*pw,y2=sy[q+1]*ph;var vx=x2-x1,vy=y2-y1,l2=vx*vx+vy*vy;if(l2<=0)continue;var tt=((xn-x1)*vx+(yn-y1)*vy)/l2;if(tt<0)tt=0;if(tt>1)tt=1;var qx=x1+tt*vx,qy=y1+tt*vy;var dx=xn-qx,dy=yn-qy,d2=dx*dx+dy*dy;if(d2<best){best=d2;bestCross=vx*(yn-y1)-vy*(xn-x1);}}if(best>=1e299)return NaN;var d=Math.sqrt(best);if(sideDefined==1){var sg=bestCross<0?-1:1;if(bestCross==0)sg=matSign;if(sg!=matSign)d=-d;}return d;}";
    js = js + "var W=imp.getWidth(),H=imp.getHeight();var target=" + d2s(areaSamplingTarget,0) + ";if(target<10000)target=10000;var step=Math.ceil(Math.sqrt((W*H)/target));if(step<1)step=1;";
    js = js + "var bc=" + d2s(bandCount,0) + ",bw=" + d2s(bandNm,12) + ";var areas=new Array(bc);for(var z=0;z<bc;z++)areas[z]=0;var validArea=0;var inBandArea=0;var sampled=0;";
    js = js + "for(var y0=0;y0<H;y0+=step){var ch=Math.min(step,H-y0);var cy=y0+ch/2.0;for(var x0=0;x0<W;x0+=step){var cw=Math.min(step,W-x0);var cx=x0+cw/2.0;var xi=Math.floor(cx),yi=Math.floor(cy);var valid=(requirePanels==0||panels.length==0||anyContains(panels,xi,yi));if(valid&&masks.length>0&&!anyContains(masks,xi,yi))valid=false;if(valid&&anyContains(exclusions,xi,yi))valid=false;if(!valid)continue;var a=cw*ch*pw*ph;validArea+=a;var dd=sdist(cx,cy);if(!isNaN(dd)&&dd>=0){var b=Math.floor(dd/bw);if(b>=0&&b<bc){areas[b]+=a;inBandArea+=a;}}sampled++;}}";
    js = js + "OUT=step+'|'+validArea+'|'+inBandArea+'|'+sampled+'|'+areas.join(',');";
    js = js + "}}OUT;";
    result = eval("js", js);
    if (startsWith(result, "ERROR")) {
        IJ.log("Cavity v8 area sampling: " + result);
        return 0;
    }
    parts = split(result, "|");
    if (parts.length < 5) return 0;
    lastAreaSamplingStepPx = parseFloat(parts[0]);
    lastValidAreaNm2 = parseFloat(parts[1]);
    areaValues = split(parts[4], ",");
    lastBandAreasNm2 = newArray(bandCount);
    for (b=0; b<bandCount; b++) {
        lastBandAreasNm2[b] = 0;
        if (b < areaValues.length) lastBandAreasNm2[b] = parseFloat(areaValues[b]);
    }
    return 1;
}

// -----------------------------------------------------------------------------
// Quantitative preflight: ensure every included cavity is represented by the
// configured non-negative depth bands. This prevents silent omission from the
// Band_Summary table when a cavity lies beyond the current band range.
// -----------------------------------------------------------------------------

function computeIncludedBandCoverage() {
    coverageMaxBand = -1;
    coverageUnbanded = 0;
    coverageIncluded = 0;
    n = roiManager("count");
    for (ii=0; ii<n; ii++) {
        safeRoiSelect(ii);
        if (currentRoiIsCavity()) {
            inc = round(propNumber("Include_in_statistics", 1));
            if (inc) {
                coverageIncluded++;
                bi = round(propNumber("Band_index", -1));
                if (bi < 0) coverageUnbanded++;
                else if (bi > coverageMaxBand) coverageMaxBand = bi;
            }
        }
    }
    return 1;
}

function quantitativeExportPreflight() {
    imageOk=lightEnsureCurrentImage();
    if(imageOk==0)return 0;
    if(lightSourceSha256==""||lengthOf(lightSourceSha256)!=64){
        showMessage("Exportacion no disponible","La imagen no tiene SHA-256 de origen.");
        return 0;
    }
    path=lightResolveSourcePath();
    if(path=="")return 0;
    actualSha=IJ.checksum("SHA-256 file",path);
    if(actualSha!=lightSourceSha256){
        showMessage("Integridad bloqueada","La fuente actual no coincide con el SHA-256 registrado.");
        return 0;
    }
    scaleReady=updateScaleMaybe();
    if(scaleReady==0||lightScaleConfirmed==0){
        showMessage("Exportacion no disponible","Confirma primero la escala fisica.");
        return 0;
    }
    countsReady=lightRefreshObjectCounts();
    if(countsReady==0){
        showMessage("Exportacion no disponible","No se pudieron contar los objetos del ROI Manager.");
        return 0;
    }
    maskTotal=lightObjectCountMasks;
    if(maskTotal==0&&lightUseWholeImage==0){
        showMessage("Exportacion no disponible","Dibuja un area valida o confirma toda la imagen.");
        return 0;
    }
    if(lightImageMode=="with_surface"){
        surfaceTotal=lightObjectCountSurfaces;
        if(surfaceTotal!=1||surfaceDefined==0||surfaceSideDefined==0){
            showMessage("Exportacion no disponible","El modo con superficie exige una superficie unica y lado del material.");
            return 0;
        }
    }
    cavityTotal=lightObjectCountCavities;
    if(cavityTotal==0){
        showMessage("Exportacion no disponible","No hay cavidades registradas.");
        return 0;
    }
    preparedOk=lightPrepareAnalysisState(0,0);
    if(preparedOk==0)return 0;
    maxBand=-1;
    n=roiManager("count");
    for(i=0;i<n;i++){
        safeRoiSelect(i);
        if(currentRoiIsCavity()){
            b=round(propNumber("Band_index",-1));
            if(b>maxBand)maxBand=b;
        }
    }
    if(maxBand>=bandCount)bandCount=maxBand+1;
    updateSessionMetadataRoi();
    return 1;
}

function v51AutoExtendBands(verbose) {
    // Never drop deep measurements merely because the initial display range
    // was too short. Negative/unbanded objects remain a separate QC issue.
    selectionToken = p1CaptureScientificSelectionToken();
    if (startsWith(selectionToken, "CONFLICT")) {
        showStatus("CTL P1: seleccion divergente; historial de bandas no actualizado.");
        return 0;
    }
    computeIncludedBandCoverage();
    maxBand = coverageMaxBand;
    requiredBands = maxBand + 1;
    if (requiredBands <= bandCount) {
        if (!p1RestoreScientificSelectionToken(selectionToken)) {
            roiManager("deselect");
            Roi.selectNone;
            showStatus("CTL P1 METADATA_SELECTION_RESTORE_FAILED: bandas con seleccion neutral.");
        }
        return 0;
    }
    oldBandCount = bandCount;
    bandCount = requiredBands;
    syncAllObjects(0);
    if (!updateSessionMetadataRoi()) {
        if (!p1RestoreScientificSelectionToken(selectionToken)) {
            roiManager("deselect");
            Roi.selectNone;
        }
        showStatus("CTL P1 METADATA_UPDATE_FAILED: historial de bandas no actualizado.");
        return 0;
    }
    metadataIndex = findMetadataIndex();
    if (metadataIndex < -1) {
        if (!p1RestoreScientificSelectionToken(selectionToken)) {
            roiManager("deselect");
            Roi.selectNone;
        }
        showStatus("CTL P1 METADATA_INVENTORY_AMBIGUOUS: historial de bandas no actualizado.");
        return 0;
    }
    if (metadataIndex >= 0) {
        if (!p1SelectMetadataIndexExact(metadataIndex)) {
            if (!p1RestoreScientificSelectionToken(selectionToken)) {
                roiManager("deselect");
                Roi.selectNone;
            }
            showStatus("CTL P1 METADATA_SELECTION_FAILED: historial de bandas no modificado.");
            return 0;
        }
        extensionTime = d2s(getTime(),0);
        extensionDelta = bandCount-oldBandCount;
        extensionHistory = propString("Band_auto_extension_history", "");
        extensionEntry = extensionTime + ":" + oldBandCount + ">" + bandCount + "@" + d2s(bandNm,9) + "nm";
        if (extensionHistory != "") extensionHistory = extensionHistory + ";";
        extensionHistory = extensionHistory + extensionEntry;
        Roi.setProperty("Band_count_previous", d2s(oldBandCount,0));
        Roi.setProperty("Band_count_auto_extended_to", d2s(bandCount,0));
        Roi.setProperty("Band_auto_extension_delta", d2s(extensionDelta,0));
        Roi.setProperty("Band_auto_extension_time_ms", extensionTime);
        Roi.setProperty("Band_auto_extension_policy", "fixed_width_auto_count");
        Roi.setProperty("Band_auto_extension_history", extensionHistory);
        roiManager("update");
    }
    if (!p1RestoreScientificSelectionToken(selectionToken)) {
        roiManager("deselect");
        Roi.selectNone;
        showStatus("CTL P1 METADATA_SELECTION_RESTORE_FAILED: bandas con seleccion neutral.");
    }
    if (verbose) showStatus("Bandas ampliadas automaticamente: " + oldBandCount + " -> " + bandCount + ".");
    return bandCount-oldBandCount;
}

// -----------------------------------------------------------------------------
// Validation
// -----------------------------------------------------------------------------

function validateProject() {
    imageOk = lightEnsureCurrentImage();
    if (imageOk == 0) return 0;

    errors = 0;
    warnings = 0;
    areaMissing = 0;
    report = "CAVITY TEM LIGHT 1.1.1 R9 - VALIDACION DE IMAGEN\n";
    report = report + "====================================================\n\n";
    report = report + "Proyecto: " + lightProjectName + " [" + lightProjectId + "]\n";
    report = report + "Imagen: " + lightImageId + "\n";
    report = report + "Revision activa: " + lightCurrentRevision + "\n";
    report = report + "Modo: " + lightImageMode + "\n\n";

    path = lightResolveSourcePath();
    if (path == "") {
        report = report + "ERROR: no se ha localizado la fuente DM3/DM4.\n";
        errors++;
    } else {
        actualSha = IJ.checksum("SHA-256 file", path);
        if (actualSha != lightSourceSha256) {
            report = report + "ERROR: el SHA-256 actual no coincide con el registro.\n";
            errors++;
        } else report = report + "OK: identidad de ventana y fuente verificadas por project_id, image_id y SHA-256.\n";
    }

    scaleUpdated = updateScaleMaybe();
    if (scaleUpdated == 0 || lightScaleConfirmed == 0) {
        report = report + "ERROR: escala fisica no confirmada.\n";
        errors++;
    } else report = report + "OK: escala " + d2s(nmPerPixelX,9) + " x " + d2s(nmPerPixelY,9) + " nm/px (" + lightScaleOrigin + ").\n";

    preparedOk = lightPrepareAnalysisState(0,0);
    if (preparedOk == 0) {
        report = report + "ERROR: no se pudo preparar el estado cuantitativo de las ROIs.\n";
        errors++;
    }

    countsOk = lightRefreshObjectCounts();
    if (countsOk == 0) {
        report = report + "ERROR: no se pudieron contar los objetos del ROI Manager.\n";
        errors++;
    }

    auditText = lightAuditCavitiesFast();
    auditParts = split(auditText, "|");
    auditOk = 1;
    if (auditParts.length < 13) auditOk = 0;
    if (auditOk == 1) {
        cavCount = round(parseFloat(auditParts[0]));
        included = round(parseFloat(auditParts[1]));
        sizeValid = round(parseFloat(auditParts[2]));
        edge = round(parseFloat(auditParts[3]));
        dup = round(parseFloat(auditParts[4]));
        confirmed = round(parseFloat(auditParts[5]));
        uncertain = round(parseFloat(auditParts[6]));
        artifacts = round(parseFloat(auditParts[7]));
        otherClasses = round(parseFloat(auditParts[8]));
        includedConfirmed = round(parseFloat(auditParts[9]));
        includedUncertain = round(parseFloat(auditParts[10]));
        idAuditErrors = round(parseFloat(auditParts[11]));
        idAuditDuplicateIds = round(parseFloat(auditParts[12]));
    } else {
        cavCount = lightObjectCountCavities;
        included = 0;
        sizeValid = 0;
        edge = 0;
        dup = 0;
        confirmed = 0;
        uncertain = 0;
        artifacts = 0;
        otherClasses = 0;
        includedConfirmed = 0;
        includedUncertain = 0;
        idAuditErrors = 0;
        idAuditDuplicateIds = 0;
        report = report + "ERROR: no se pudo completar la auditoria rapida de cavidades.\n";
        errors++;
    }
    lightLastIdAuditErrors = idAuditErrors;
    lightLastIdAuditDuplicateIds = idAuditDuplicateIds;

    surfaceOk = 1;
    surfaceCount = lightObjectCountSurfaces;
    if (lightImageMode == "with_surface") {
        if (surfaceCount != 1 || surfaceDefined == 0 || surfaceSideDefined == 0) {
            surfaceOk = 0;
            report = report + "ERROR: el modo con superficie exige una superficie unica y el lado del material.\n";
            errors++;
        } else report = report + "OK: superficie y lado del material definidos.\n";
    } else report = report + "OK: modo sin superficie; no se exigen bandas de profundidad.\n";

    maskCount = lightObjectCountMasks;
    exclusionCount = lightObjectCountExclusions;
    if (maskCount == 0 && lightUseWholeImage == 0) {
        areaMissing = 1;
        report = report + "ERROR: falta definir el area de analisis. Pulsa 'Toda la imagen valida' o dibuja al menos un 'Area valida'.\n";
        report = report + "       Sin este paso no existe un denominador fisico para calcular densidades.\n";
        errors++;
    } else if (lightImageMode == "with_surface" && surfaceOk == 0) {
        report = report + "ERROR: el area no se calcula hasta definir correctamente la superficie.\n";
    } else {
        areaCalculated = lightComputeExactAreaAndDepth();
        if (areaCalculated == 1) {
            report = report + "OK: area neta " + d2s(lastValidAreaNm2/1000000,9) + " um^2";
            report = report + " (areas validas=" + maskCount + ", exclusiones=" + exclusionCount + ").\n";
        } else {
            report = report + "ERROR: el area neta calculada no es positiva.\n";
            errors++;
        }
    }

    if (lightThicknessNm <= 0) {
        report = report + "AVISO: sin espesor; no se calculara densidad volumetrica nominal.\n";
        warnings++;
    } else report = report + "OK: espesor " + d2s(lightThicknessNm,3) + " +/- " + d2s(lightThicknessUncertaintyNm,3) + " nm (" + lightThicknessMethod + ").\n";

    if (cavCount == 0) {
        report = report + "ERROR: no hay cavidades.\n";
        errors++;
    }

    report = report + "\nOBJETOS ACTUALES\n";
    report = report + "Cavidades: " + cavCount + " (confirmadas=" + confirmed + ", dudosas=" + uncertain + ", posibles artefactos=" + artifacts + ", otras=" + otherClasses + ").\n";
    report = report + "Dislocaciones: " + lightObjectCountDislocations + "; bordes de grano: " + lightObjectCountGrainBoundaries + "; interfaces: " + lightObjectCountInterfaces + ".\n";
    report = report + "Validas para recuento: " + included + " (confirmadas=" + includedConfirmed + ", dudosas=" + includedUncertain + ").\n";
    report = report + "Validas para tamanos: " + sizeValid + "; tocan borde: " + edge + "; duplicados sospechosos: " + dup + ".\n";
    report = report + "Incluir dudosas en estadistica: " + lightIncludeUncertain + ".\n";
    report = report + "Contador historico de identificadores: " + cavityCounter + " (puede contener huecos por borrados o deshacer).\n";
    report = report + "Identidad ROI/etiqueta: errores=" + idAuditErrors + "; IDs duplicados=" + idAuditDuplicateIds + "; modo=roi_name_v1.\n";

    if (idAuditErrors > 0 || idAuditDuplicateIds > 0) {
        report = report + "ERROR: el nombre visible, Cavity_id y Cavity_serial no son coherentes en todas las cavidades.\n";
        errors++;
    }
    if (dup > 0) {
        report = report + "AVISO: revisa los duplicados antes de exportar.\n";
        warnings++;
    }
    if (included == 0) {
        report = report + "ERROR: ninguna cavidad cumple los criterios de recuento.\n";
        errors++;
    }

    report = report + "\nRESULTADO: " + errors + " errores y " + warnings + " avisos.\n";
    if (errors == 0) {
        report = report + "La imagen esta preparada para guardar una revision y calcular/exportar resultados tecnicos.\n";
        report = report + "PASO SIGUIENTE: pulsa Calcular y exportar resultados en la pestana 5.\n";
    } else {
        report = report + "Corrige los errores antes de utilizar resultados cuantitativos.\n";
        if (areaMissing == 1) report = report + "\nPASO SIGUIENTE: abre la pestana '2 Preparar' y decide si toda la imagen es valida o dibuja el area real de muestra.\n";
    }
    report = report + "\nRENDIMIENTO R9\n";
    report = report + "Preparacion reutilizada: " + lightLastPreparationReused + "; tiempo: " + d2s(lightLastPreparationDurationMs/1000,3) + " s.\n";
    report = report + "Conteo y auditoria de identidad: un unico recorrido Java del ROI Manager.\n";
    report = report + "Area: " + lightAreaComputationMode + "; tiempo: " + d2s(lightAreaComputationDurationMs/1000,3) + " s.\n";
    report = report + "\nEstado de la rama: " + lightValidationState + ". Requiere aceptacion con Fiji y DM3/DM4 reales antes de uso cientifico definitivo.\n";

    showText("Cavity_Light_Validation", report);
    if (errors == 0) return 1;
    return 0;
}


// -----------------------------------------------------------------------------
// Export
// -----------------------------------------------------------------------------

function exportAnalysis() { lightExportCurrentImage(); }


function exportFeaturePanelAndRegionTables() {
    featureRow = 0;
    panelRow = 0;
    regionRow = 0;
    n = roiManager("count");
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        type = currentRoiType();
        currentName = Roi.getName;
        if (isLinearFeatureType(type)) {
            Table.set("feature_id", featureRow, propString("Feature_id", currentName), "Microstructural_Features");
            Table.set("feature_type", featureRow, type, "Microstructural_Features");
            Table.set("length_nm", featureRow, propNumber("Length_nm", NaN), "Microstructural_Features");
            Table.set("length_um", featureRow, propNumber("Length_um", NaN), "Microstructural_Features");
            Table.set("point_count", featureRow, propNumber("Point_count", NaN), "Microstructural_Features");
            Table.set("confidence", featureRow, propString("Confidence", ""), "Microstructural_Features");
            Table.set("notes", featureRow, propString("Notes", ""), "Microstructural_Features");
            featureRow++;
        } else if (type == "panel") {
            Table.set("panel_id", panelRow, propString("Panel_id", currentName), "TEM_Panels");
            Table.set("panel_order", panelRow, propNumber("Panel_order", NaN), "TEM_Panels");
            Table.set("source_filename", panelRow, propString("Source_filename", ""), "TEM_Panels");
            Table.set("area_nm2", panelRow, propNumber("Area_nm2", NaN), "TEM_Panels");
            Table.set("area_um2", panelRow, propNumber("Area_um2", NaN), "TEM_Panels");
            Table.set("notes", panelRow, propString("Notes", ""), "TEM_Panels");
            panelRow++;
        } else if (type == "analysis_mask" || type == "exclusion") {
            Table.set("region_id", regionRow, objectIdCurrent(type), "Analysis_Regions");
            Table.set("region_type", regionRow, type, "Analysis_Regions");
            Table.set("label_or_reason", regionRow, propString("Mask_label", propString("Exclusion_reason", "")), "Analysis_Regions");
            Table.set("area_nm2", regionRow, propNumber("Area_nm2", NaN), "Analysis_Regions");
            Table.set("area_um2", regionRow, propNumber("Area_um2", NaN), "Analysis_Regions");
            Table.set("notes", regionRow, propString("Notes", ""), "Analysis_Regions");
            regionRow++;
        }
    }
}

function showLegacyRoiGroupSummary() {
    if (nImages() <= 0) exit("Abre una imagen y carga/importa ROIs primero.");
    run("ROI Manager...");
    n = roiManager("count");
    cCav=0; cMask=0; cPanel=0; cGB=0; cDisl=0; cExcl=0; cSurf=0; cScale=0; cMeta=0; cOther=0;
    for (rs=0; rs<n; rs++) {
        if (!safeRoiSelect(rs)) continue;
        t = currentRoiType();
        if (t == "cavity") cCav++;
        else if (t == "analysis_mask") cMask++;
        else if (t == "panel") cPanel++;
        else if (t == "grain_boundary") cGB++;
        else if (t == "dislocation") cDisl++;
        else if (t == "exclusion") cExcl++;
        else if (t == "surface_reference") cSurf++;
        else if (t == "scale_reference") cScale++;
        else if (t == "session_metadata") cMeta++;
        else cOther++;
    }
    msg = "ROIs cargadas: " + n + "\n\n";
    msg += "Cavidades: " + cCav + "\n";
    msg += "Mascaras/area valida: " + cMask + "\n";
    msg += "Paneles TEM: " + cPanel + "\n";
    msg += "Bordes de grano: " + cGB + "\n";
    msg += "Dislocaciones: " + cDisl + "\n";
    msg += "Exclusiones: " + cExcl + "\n";
    msg += "Superficie: " + cSurf + "\n";
    msg += "Escala: " + cScale + "\n";
    msg += "Metadata: " + cMeta + "\n";
    msg += "Otros/no clasificados: " + cOther + "\n\n";
    msg += "Los nombres legacy CAV_, MASK_, GB_ y DISL_ se reconocen automaticamente.";
    showMessage("Resumen ROIs", msg);
}

// -----------------------------------------------------------------------------
// Settings, instructions and display modes
// -----------------------------------------------------------------------------

function settingsDialog() {
    imageOk = lightEnsureCurrentImage();
    if (imageOk == 0) return;
    lightInteractiveReadResizeStep();
    oldActive = activeDiameterNm;
    oldBand = bandNm;
    oldCount = bandCount;
    oldExclude = excludeNegativeDepth;
    oldInclude = lightIncludeUncertain;
    oldHist = lightHistogramBinNm;
    oldFeature = lightFeatureDistanceBinNm;
    oldDupPx = duplicateCenterTolPx;
    oldDupRel = duplicateRelativeTol;
    oldDupD = duplicateDiameterTolFraction;
    oldSel = selectionTolerancePx;
    oldLabels = showRoiLabels;
    oldFill = fillCavities;
    oldAlpha = fillAlpha;
    oldStroke = roiStrokeWidth;
    oldRestore = restoreViewAfterRoi;
    oldPreview = lightInteractivePreviewEnabled;
    oldResizeStep = lightInteractiveResizeStepNm;

    Dialog.create("Ajustes Cavity TEM Light R9");
    Dialog.addNumber("Diametro activo (nm):", activeDiameterNm);
    Dialog.addNumber("Ancho de banda de profundidad (nm):", bandNm);
    Dialog.addNumber("Numero inicial de bandas:", bandCount);
    Dialog.addCheckbox("Excluir profundidad negativa", excludeNegativeDepth);
    Dialog.addCheckbox("Incluir cavidades dudosas en recuento principal", lightIncludeUncertain);
    Dialog.addNumber("Ancho del histograma (nm):", lightHistogramBinNm);
    Dialog.addNumber("Intervalo de distancia a microestructura (nm):", lightFeatureDistanceBinNm);
    Dialog.addMessage("Control de duplicados y seleccion:");
    Dialog.addNumber("Tolerancia centro duplicado (px):", duplicateCenterTolPx);
    Dialog.addNumber("Tolerancia relativa de centro:", duplicateRelativeTol);
    Dialog.addNumber("Tolerancia relativa de diametro:", duplicateDiameterTolFraction);
    Dialog.addNumber("Tolerancia de seleccion (px):", selectionTolerancePx);
    Dialog.addMessage("Interaccion R9:");
    Dialog.addCheckbox("Mostrar circulo del diametro activo bajo el cursor", lightInteractivePreviewEnabled);
    Dialog.addNumber("Sensibilidad Alt+rueda (Ctrl opcional) (nm/paso):", lightInteractiveResizeStepNm);
    Dialog.addMessage("Rango permitido: 0.001 a 0.200 nm por paso de rueda.");
    Dialog.addMessage("Visualizacion:");
    Dialog.addCheckbox("Mostrar etiquetas con el nombre ROI exacto", showRoiLabels);
    Dialog.addCheckbox("Rellenar cavidades", fillCavities);
    Dialog.addNumber("Opacidad de relleno (0-255):", fillAlpha);
    Dialog.addNumber("Grosor de contorno (px):", roiStrokeWidth);
    Dialog.addCheckbox("Restaurar vista despues de crear ROIs", restoreViewAfterRoi);
    Dialog.show();

    newActive = Dialog.getNumber();
    newBand = Dialog.getNumber();
    newCount = round(Dialog.getNumber());
    newExclude = Dialog.getCheckbox();
    newInclude = Dialog.getCheckbox();
    newHist = Dialog.getNumber();
    newFeature = Dialog.getNumber();
    newDupPx = Dialog.getNumber();
    newDupRel = Dialog.getNumber();
    newDupD = Dialog.getNumber();
    newSel = Dialog.getNumber();
    newPreview = Dialog.getCheckbox();
    newResizeStep = Dialog.getNumber();
    newLabels = Dialog.getCheckbox();
    newFill = Dialog.getCheckbox();
    newAlpha = round(Dialog.getNumber());
    newStroke = round(Dialog.getNumber());
    newRestore = Dialog.getCheckbox();

    if (newActive < 0) newActive = 0;
    if (newBand <= 0) newBand = 50;
    if (newCount < 1) newCount = 1;
    if (newHist <= 0) newHist = 1;
    if (newFeature <= 0) newFeature = 10;
    if (newAlpha < 0) newAlpha = 0;
    if (newAlpha > 255) newAlpha = 255;
    if (newStroke < 1) newStroke = 1;
    if (newResizeStep < lightInteractiveResizeMinNm) newResizeStep = lightInteractiveResizeMinNm;
    if (newResizeStep > lightInteractiveResizeMaxNm) newResizeStep = lightInteractiveResizeMaxNm;

    quantitativeChanged = 0;
    if (lightNumberChanged(newBand, oldBand) == 1) quantitativeChanged = 1;
    if (newCount != oldCount) quantitativeChanged = 1;
    if (newExclude != oldExclude) quantitativeChanged = 1;
    if (newInclude != oldInclude) quantitativeChanged = 1;
    if (lightNumberChanged(newHist, oldHist) == 1) quantitativeChanged = 1;
    if (lightNumberChanged(newFeature, oldFeature) == 1) quantitativeChanged = 1;
    if (lightNumberChanged(newDupPx, oldDupPx) == 1) quantitativeChanged = 1;
    if (lightNumberChanged(newDupRel, oldDupRel) == 1) quantitativeChanged = 1;
    if (lightNumberChanged(newDupD, oldDupD) == 1) quantitativeChanged = 1;

    objects = lightScientificObjectCount();
    if (quantitativeChanged == 1 && objects > 0) {
        if (!getBoolean("Estos ajustes cambian calculos, inclusiones o control de duplicados. Las ROIs se recalcularan y se guardara una revision nueva.\n\nContinuar?", "Cambiar y revisar", "Cancelar")) return;
        if (!quantitativeRevisionPreflight()) return;
    }

    activeDiameterNm = newActive;
    bandNm = newBand;
    bandCount = newCount;
    excludeNegativeDepth = newExclude;
    lightIncludeUncertain = newInclude;
    lightHistogramBinNm = newHist;
    lightFeatureDistanceBinNm = newFeature;
    duplicateCenterTolPx = newDupPx;
    duplicateRelativeTol = newDupRel;
    duplicateDiameterTolFraction = newDupD;
    selectionTolerancePx = newSel;
    lightInteractivePreviewEnabled = newPreview;
    lightInteractiveResizeStepNm = newResizeStep;
    showRoiLabels = newLabels;
    fillCavities = newFill;
    fillAlpha = newAlpha;
    roiStrokeWidth = newStroke;
    restoreViewAfterRoi = newRestore;
    usePanelsAsMask = 0;
    lightInteractiveSaveResizePreference();
    lightInteractivePushState(lightInteractiveMode);
    if (lightInteractivePreviewEnabled == 0) lightInteractiveRemovePreview();
    styleChanged = 0;
    if (newFill != oldFill) styleChanged = 1;
    if (newAlpha != oldAlpha) styleChanged = 1;
    if (newStroke != oldStroke) styleChanged = 1;
    labelsChanged = 0;
    if (newLabels != oldLabels) labelsChanged = 1;
    if (quantitativeChanged == 1) {
        syncAllObjects(0);
        restyleAllRois();
        showAllRois();
    } else {
        updateSessionMetadataRoi();
        if (styleChanged == 1) {
            restyleAllRois();
            showAllRois();
        } else if (labelsChanged == 1) showAllRois();
    }
    lightWriteImageMetadata();
    lightUpdateRegistry();
    rev = "";

    if (quantitativeChanged == 1 && objects > 0) {
        rev = lightSaveRevisionCore(0);
        if (rev == "") {
            activeDiameterNm = oldActive;
            bandNm = oldBand;
            bandCount = oldCount;
            excludeNegativeDepth = oldExclude;
            lightIncludeUncertain = oldInclude;
            lightHistogramBinNm = oldHist;
            lightFeatureDistanceBinNm = oldFeature;
            duplicateCenterTolPx = oldDupPx;
            duplicateRelativeTol = oldDupRel;
            duplicateDiameterTolFraction = oldDupD;
            selectionTolerancePx = oldSel;
            lightInteractivePreviewEnabled = oldPreview;
            lightInteractiveResizeStepNm = oldResizeStep;
            showRoiLabels = oldLabels;
            fillCavities = oldFill;
            fillAlpha = oldAlpha;
            roiStrokeWidth = oldStroke;
            restoreViewAfterRoi = oldRestore;
            lightInteractiveSaveResizePreference();
            lightInteractivePushState(lightInteractiveMode);
            syncAllObjects(0);
            updateSessionMetadataRoi();
            restyleAllRois();
            showAllRois();
            lightWriteImageMetadata();
            lightUpdateRegistry();
            showMessage("Ajustes restaurados", "No se pudo guardar la revision. Se restauraron los valores anteriores.");
            return;
        }
    }
    lightAppendLog("SETTINGS_UPDATED", "band_nm="+lightNum(bandNm)+"; bands="+bandCount+"; include_uncertain="+lightIncludeUncertain+"; histogram_nm="+lightNum(lightHistogramBinNm)+"; feature_bin_nm="+lightNum(lightFeatureDistanceBinNm)+"; resize_step_nm="+lightNum(lightInteractiveResizeStepNm)+"; exact_labels="+showRoiLabels+"; revision="+rev);
    lightRefreshPanel();
    showStatus("Ajustes Light R9 actualizados.");
}



function chooseDisplayMode() {
    choices = newArray("Tipo de objeto", "Banda de profundidad", "Calidad/validacion");
    current = choices[0];
    if (displayMode == "band") current = choices[1];
    if (displayMode == "quality") current = choices[2];
    Dialog.create("Modo de color");
    Dialog.addChoice("Colorear cavidades por:", choices, current);
    Dialog.show();
    choice = Dialog.getChoice();
    displayMode = "type";
    if (choice == choices[1]) displayMode = "band";
    if (choice == choices[2]) displayMode = "quality";
    restyleAllRois();
    showAllRois();
    updateSessionMetadataRoi();
    refreshControlPanelStatus();
}

function toggleLabels() {
    showRoiLabels = 1-showRoiLabels;
    lightInteractivePushState(lightInteractiveMode);
    showAllRois();
    updateSessionMetadataRoi();
    lightWriteImageMetadata();
    lightRefreshPanel();
    if (showRoiLabels) showStatus("Etiquetas exactas ROI Manager visibles.");
    else showStatus("Etiquetas ROI ocultas; los IDs internos no cambian.");
}

function showKeyboardShortcuts() {
    msg = "ATAJOS DE CAVITY ROI TOOLSET v8\n";
    msg = msg + "================================\n\n";
    msg = msg + "PROYECTO Y GEOMETRIA\n";
    msg = msg + "Ctrl+H   Mostrar esta tabla de atajos\n";
    msg = msg + "Ctrl+P   Proyecto y trazabilidad\n";
    msg = msg + "Ctrl+K   Calibrar o sustituir escala\n";
    msg = msg + "Ctrl+B   Definir o sustituir superficie\n";
    msg = msg + "Ctrl+S   Guardar sesion\n\n";
    msg = msg + "CAVIDADES\n";
    msg = msg + "Ctrl+M   Activar medicion continua: arrastrar = medir + crear\n";
    msg = msg + "Ctrl+R   Activar modo anadir\n";
    msg = msg + "Ctrl+E   Activar modo seleccionar/editar\n";
    msg = msg + "Esc   Terminar los modos Medir continuo o Anadir y pasar a Seleccionar\n";
    msg = msg + "Cancelar/Esc en una ventana de dibujo   Finaliza la serie sin mostrar una excepcion\n";
    msg = msg + "Ctrl+U   Sincronizar ROI seleccionada\n";
    msg = msg + "Ctrl+Shift+U   Sincronizar toda la sesion\n";
    msg = msg + "Supr o Retroceso   Borrar seleccionada\n";
    msg = msg + "Ctrl+Z   Deshacer ultima adicion o borrado\n";
    msg = msg + "Ctrl+T   Buscar duplicados\n\n";
    msg = msg + "COLLAGE Y MICROESTRUCTURA\n";
    msg = msg + "Ctrl+Shift+P   Paneles TEM en modo continuo\n";
    msg = msg + "Ctrl+Shift+M   Mascaras validas en modo continuo\n";
    msg = msg + "Ctrl+Shift+X   Zonas excluidas en modo continuo\n";
    msg = msg + "Ctrl+G   Bordes de grano en modo continuo\n";
    msg = msg + "Ctrl+L   Dislocaciones por polilinea, aceptacion automatica\n";
    msg = msg + "Ctrl+Shift+L   Bucles por polilinea cerrada\n";
    msg = msg + "Supr durante trazado   Borrar seleccionada o ultima; Esc finaliza la serie\n";
    msg = msg + "Cancelar en la ventana de dibujo   Terminar la serie activa\n\n";
    msg = msg + "REVISION Y NAVEGACION\n";
    msg = msg + "Ctrl+Shift+V   Validar proyecto\n";
    msg = msg + "Ctrl+Shift+E   Exportar analisis\n";
    msg = msg + "Rueda   Desplazamiento vertical\n";
    msg = msg + "Shift+rueda   Desplazamiento horizontal\n";
    msg = msg + "Ctrl+rueda   Zoom\n";
    msg = msg + "Flechas   Desplazar la vista\n";
    msg = msg + "Esc   Terminar captura continua o cancelar el dibujo activo\n\n";
    msg = msg + "No se utilizan teclas F ni la tecla Fn.";
    showText("Cavity ROI Toolset v8 - atajos", msg);
}

function showInstructions() {
    msg = "CAVITY TEM STUDIO v5.6.0 - GUIA DE USO\n";
    msg = msg + "==================================\n\n";
    msg = msg + "OBJETIVO\n";
    msg = msg + "Registrar de forma trazable la posicion y geometria de cavidades en imagenes TEM individuales o collages, y obtener distribuciones de tamano y densidad en funcion de la distancia perpendicular a una superficie unica.\n\n";
    msg = msg + "FLUJO RECOMENDADO\n";
    msg = msg + "1. Abre el proyecto y el montaje maestro desde Studio. La lista exacta de fuentes de panels.csv es la trazabilidad autoritativa; primera/ultima son solo un resumen informativo.\n";
    msg = msg + "2. Escala: usa la calibracion conciliada DM3/OME/proyecto. Una referencia amarilla o una barra de escala en overlay son ayudas visuales opcionales y no determinan los calculos.\n";
    msg = msg + "3. Superficie: dibuja una recta, polilinea o linea libre y despues marca un punto dentro del material. Solo existe una superficie activa; la anterior se conserva si cancelas.\n";
    msg = msg + "4. Pulsa Actualizar paneles SVG. Fiji importa panels.csv, el orden de apilado y el ownership certificado; no dibujes paneles a mano salvo en un flujo legacy deliberado. Cada pixel de solape pertenece a un solo panel efectivo.\n";
    msg = msg + "5. El area base es la cobertura SVG/ownership. Una mascara de inclusion es opcional y la restringe; las zonas de exclusion se restan. Calcular area exacta guarda el total y el desglose reconciliado por panel.\n";
    msg = msg + "6. Medir continuo: pulsa una vez el boton o Ctrl+M. Arrastra sobre el diametro de cada cavidad; al soltar se crea inmediatamente la ROI, sin ventana OK. El modo permanece activo hasta pulsar Esc, Ctrl+E o elegir otra herramienta.\n";
    msg = msg + "7. Modo anadir: cada click crea una cavidad con el diametro activo, incluso junto, solapada o dentro de otra. No existe separacion minima.\n";
    msg = msg + "8. Modo seleccionar/editar: click sobre una cavidad para seleccionarla; el programa activa despues la herramienta oval estandar para moverla o redimensionarla. Pulsa Sincronizar (Ctrl+U) al terminar. Supr borra y Ctrl+Z deshace una adicion o borrado.\n";
    msg = msg + "9. Duplicados: busca centros coincidentes y los marca en magenta. Es una advertencia; nunca borra ni excluye automaticamente.\n";
    msg = msg + "10. Las dislocaciones y los bucles se registran automaticamente al terminar cada trazo. Para bucles hay ovalo, elipse inclinada, polilinea cerrada y mano alzada; Ajustar a elipse conserva el contorno original para restaurarlo.\n";
    msg = msg + "11. Configura el ancho de bandas despues de identificar las cavidades. La profundidad continua se conserva y el numero de bandas se amplia automaticamente hasta cubrir los objetos incluidos.\n";
    msg = msg + "12. Valida y exporta. Los objetos que cruzan una frontera efectiva se cuentan una vez por el panel de su centroide; su tamano queda pendiente hasta una revision explicita.\n";
    msg = msg + "13. Barra de escala y guias paralelas viven en el overlay. Ocultarlas no modifica ROIs, calibracion ni pixeles del montaje.\n\n";
    msg = msg + "ATAJOS (NO SE USAN TECLAS F)\n";
    msg = msg + "Ctrl+H atajos | Ctrl+P proyecto | Ctrl+K escala | Ctrl+B superficie\n";
    msg = msg + "Ctrl+M medir continuo | Ctrl+R modo anadir | Ctrl+E seleccionar | Esc terminar captura\n";
    msg = msg + "Ctrl+U sincronizar seleccion | Ctrl+Shift+U sincronizar todo\n";
    msg = msg + "Supr borrar | Ctrl+Z deshacer | Ctrl+U sincronizar despues de editar\n";
    msg = msg + "Ctrl+G borde de grano | Ctrl+L dislocacion | Ctrl+Shift+L bucle cerrado\n";
    msg = msg + "Ctrl+Shift+P panel | Ctrl+Shift+M mascara | Ctrl+Shift+X exclusion\n";
    msg = msg + "Ctrl+T duplicados | Ctrl+Shift+V validar | Ctrl+Shift+E exportar\n";
    msg = msg + "Ctrl+S guardar sesion | Esc cancelar el dibujo activo\n\n";
    msg = msg + "NAVEGACION\n";
    msg = msg + "Rueda: desplazamiento vertical; Shift+rueda: horizontal; Ctrl+rueda: zoom. Las flechas desplazan la vista. La tecla Fn no se utiliza ni se necesita.\n\n";
    msg = msg + "CRITERIO METROLOGICO\n";
    msg = msg + "La geometria visible de cada ROI es la fuente de verdad. Al sincronizar o exportar se recalculan centro, diametro equivalente, ejes, area, volumen esferico estimado, profundidad firmada, posicion paralela a la superficie, panel, mascara, borde y banda.\n";
    msg = msg + "Las magnitudes volumetricas asumen cavidades esfericas y un espesor de foil introducido por el usuario; se exportan como estimaciones.\n";
    showText("Cavity TEM Studio v5.6.0 - instrucciones", msg);
}

// -----------------------------------------------------------------------------
// ROI appearance
// -----------------------------------------------------------------------------


function normalizeCavityClass(c) {
    c = toLowerCase(c);
    c = replace(c, " ", "_");
    if (c == "" || c == "confirmed" || c == "confirmada") return "confirmed";
    if (c == "uncertain" || c == "dudosa" || c == "doubtful" || c == "posible") return "uncertain";
    if (c == "possible_artifact" || c == "artifact" || c == "artefacto" || c == "not_cavity") return "possible_artifact";
    if (c == "secondary" || c == "secundaria") return "secondary";
    return c;
}

function cavityClassLabel(c) {
    c = normalizeCavityClass(c);
    if (c == "confirmed") return "Confirmada";
    if (c == "uncertain") return "Dudosa";
    if (c == "possible_artifact") return "Posible artefacto/no segura";
    if (c == "secondary") return "Secundaria";
    return c;
}

function setCavityClassColorVariables(c) {
    c = normalizeCavityClass(c);
    if (c == "confirmed") {
        activeStrokeColor = "#ff3333";
        activeFillColor = "#" + fillAlphaHex + "ff3333";
    } else if (c == "uncertain") {
        activeStrokeColor = "#ff9900";
        activeFillColor = "#" + fillAlphaHex + "ff9900";
    } else if (c == "possible_artifact") {
        activeStrokeColor = "#9966ff";
        activeFillColor = "#" + fillAlphaHex + "9966ff";
    } else if (c == "secondary") {
        activeStrokeColor = "#3399ff";
        activeFillColor = "#" + fillAlphaHex + "3399ff";
    } else {
        activeStrokeColor = "#ff3333";
        activeFillColor = "#" + fillAlphaHex + "ff3333";
    }
}

function chooseActiveCavityClass() {
    choices = newArray("Confirmada", "Dudosa / no segura", "Posible artefacto", "Secundaria");
    defaultChoice = "Confirmada";
    if (activeCavityClass == "uncertain") defaultChoice = "Dudosa / no segura";
    if (activeCavityClass == "possible_artifact") defaultChoice = "Posible artefacto";
    if (activeCavityClass == "secondary") defaultChoice = "Secundaria";
    Dialog.create("Tipo de cavidad activo");
    Dialog.addChoice("Las nuevas cavidades se guardaran como:", choices, defaultChoice);
    Dialog.addChoice("Confianza:", newArray("high", "medium", "low"), activeCavityConfidence);
    Dialog.addMessage("El tipo queda guardado en la propiedad Cavity_class y se exporta como columna.\nNo cambia automaticamente include_in_statistics; usa Incluir/excluir si quieres quitarla de la estadistica.");
    Dialog.show();
    c = Dialog.getChoice();
    activeCavityConfidence = Dialog.getChoice();
    if (c == "Confirmada") activeCavityClass = "confirmed";
    else if (c == "Dudosa / no segura") activeCavityClass = "uncertain";
    else if (c == "Posible artefacto") activeCavityClass = "possible_artifact";
    else activeCavityClass = "secondary";
    activeCavityClassLabel = cavityClassLabel(activeCavityClass);
    lightInteractivePushState(lightInteractiveMode);
    refreshControlPanelStatus();
    showStatus("Tipo de cavidad activo: " + activeCavityClassLabel + " (" + activeCavityConfidence + ").");
}

function setSelectedCavityClass(newClass) {
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0 || isNaN(idx)) exit("Selecciona una cavidad en el ROI Manager o en la imagen.");
    safeRoiSelect(idx);
    if (!currentRoiIsCavity()) exit("La ROI seleccionada no es una cavidad.");
    newClass = normalizeCavityClass(newClass);
    Roi.setProperty("Cavity_class", newClass);
    Roi.setProperty("Cavity_class_label", cavityClassLabel(newClass));
    if (Roi.getProperty("Cavity_confidence") == "") Roi.setProperty("Cavity_confidence", "medium");
    roiManager("update");
    syncCavityAtIndex(idx);
    applyCavityStyle();
    roiManager("update");
    showAllRois();
    refreshControlPanelStatus();
    showStatus(cavityIdCurrent() + " marcada como " + cavityClassLabel(newClass) + ".");
}

function applyCavityStyle() {
    updateFillAlphaHex();
    bandIndex = round(propNumber("Band_index", -1));
    includeStats = round(propNumber("Include_in_statistics", 1));
    manualExcluded = round(propNumber("Manual_excluded", 0));
    edge = round(propNumber("Edge_intersecting", 0));
    duplicate = propString("Duplicate_status", "clear");
    storedCavityClass = propString("Cavity_class", "confirmed");
    cavityClass = normalizeCavityClass(storedCavityClass);

    if (displayMode == "band" && bandIndex >= 0) {
        setGroupColorVariables(bandIndex+1);
    } else if (displayMode == "quality") {
        activeStrokeColor = "#33cc66";
        activeFillColor = "#" + fillAlphaHex + "33cc66";
        if (cavityClass != "confirmed") setCavityClassColorVariables(cavityClass);
        if (!includeStats || manualExcluded) {
            activeStrokeColor = "#999999";
            activeFillColor = "#" + fillAlphaHex + "999999";
        }
        if (edge) {
            activeStrokeColor = "#ffcc00";
            activeFillColor = "#" + fillAlphaHex + "ffcc00";
        }
        if (duplicate == "suspect") {
            activeStrokeColor = "#ff00ff";
            activeFillColor = "#" + fillAlphaHex + "ff00ff";
        }
    } else {
        setCavityClassColorVariables(cavityClass);
        // Duplicate warnings remain visible in every display mode.
        if (duplicate == "suspect") {
            activeStrokeColor = "#ff00ff";
            activeFillColor = "#" + fillAlphaHex + "ff00ff";
        }
        if (!includeStats && duplicate != "suspect") {
            activeStrokeColor = "#999999";
            activeFillColor = "#" + fillAlphaHex + "999999";
        }
    }

    if (fillCavities) Roi.setFillColor(activeFillColor);
    else Roi.setFillColor("#00000000");
    Roi.setStrokeColor(activeStrokeColor);
    Roi.setUnscalableStrokeWidth(roiStrokeWidth);
}

function applyFeatureStyle(featureType) {
    Roi.setFillColor("#00000000");
    if (featureType == "grain_boundary") Roi.setStrokeColor("#ffff00");
    else if (featureType == "dislocation") Roi.setStrokeColor("#00ff66");
    else Roi.setStrokeColor("#ff9900");
    Roi.setUnscalableStrokeWidth(max2(roiStrokeWidth, 2));
}

function applyLoopStyle() {
    // Closed loops are area defects, not linear dislocations. Keep a visible
    // outline and a light transparent fill without touching image pixels.
    Roi.setStrokeColor("#ff9900");
    Roi.setFillColor("#18ff9900");
    Roi.setUnscalableStrokeWidth(max2(roiStrokeWidth, 2));
}

function applyAreaObjectStyle(type) {
    if (type == "panel") {
        Roi.setFillColor("#00000000");
        Roi.setStrokeColor("white");
    } else if (type == "analysis_mask") {
        Roi.setFillColor("#1800ffff");
        Roi.setStrokeColor("cyan");
    } else if (type == "exclusion") {
        Roi.setFillColor("#22ff00ff");
        Roi.setStrokeColor("magenta");
    }
    Roi.setUnscalableStrokeWidth(max2(roiStrokeWidth, 2));
}

function restyleAllRois() {
    if (nImages() <= 0) return;
    run("ROI Manager...");
    n = roiManager("count");
    if (n <= 0) return;
    snapshotCurrentView();
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        name = Roi.getName;
        storedType = Roi.getProperty("Type");
        type = normalizedType(name, storedType);
        if (type == "cavity") applyCavityStyle();
        else if (isLinearFeatureType(type)) applyFeatureStyle(type);
        else if (type == "dislocation_loop") applyLoopStyle();
        else if (type == "panel" || type == "analysis_mask" || type == "exclusion") applyAreaObjectStyle(type);
        else if (type == "scale_reference") {
            Roi.setFillColor("#00000000");
            Roi.setStrokeColor("yellow");
            Roi.setUnscalableStrokeWidth(3);
        } else if (type == "scale_label") {
            Roi.setFillColor("#aa000000");
            Roi.setStrokeColor("#ffff00");
            Roi.setAntiAlias(1);
            Roi.setFontSize(24);
        } else if (type == "surface_reference") {
            Roi.setFillColor("#00000000");
            Roi.setStrokeColor("cyan");
            Roi.setUnscalableStrokeWidth(3);
        } else if (type == "session_metadata") {
            Roi.setFillColor("#00000000");
            Roi.setStrokeColor("#00000000");
        }
        roiManager("update");
    }
    restoreViewSnapshot();
}

function showAllRois() {
    run("ROI Manager...");
    if (showRoiLabels == 1) {
        roiManager("show all with labels");
        lightApplyStableNameLabels();
    } else {
        roiManager("show all without labels");
    }
}

function lightApplyStableNameLabels() {
    if (nImages() <= 0) return;
    js = "var WM=Packages.ij.WindowManager,imp=WM.getCurrentImage();if(imp!=null){var ic=imp.getCanvas();if(ic!=null){var ov=ic.getShowAllList();if(ov!=null){ov.drawLabels(true);ov.drawNames(true);ov.selectable(false);ov.setDraggable(false);try{ov.setLabelFontSize(12,'bold background');}catch(e){}ic.repaint();imp.draw();}}}";
    eval("js", js);
}

function lightRefreshSelectedRoiOverlay(idx) {
    if (nImages() <= 0) return 0;
    js = "(function(){var WM=Packages.ij.WindowManager,RM=Packages.ij.plugin.frame.RoiManager,imp=WM.getCurrentImage(),rm=RM.getInstance2();if(imp==null||rm==null)return '0';var ic=imp.getCanvas(),ov=ic==null?null:ic.getShowAllList();if(ov==null||ov.size()!=rm.getCount()||"+idx+"<0||"+idx+">=rm.getCount())return '0';var r=rm.getRoi("+idx+");if(r==null)return '0';ov.set(r,"+idx+");ov.drawLabels("+showRoiLabels+");ov.drawNames("+showRoiLabels+");ov.selectable(false);ov.setDraggable(false);try{ov.setLabelFontSize(12,'bold background');}catch(e){}ic.repaint();imp.draw();return '1';})()";
    overlayResult = "" + eval("js", js);
    if (overlayResult == "1") return 1;
    return 0;
}







function updateFillAlphaHex() {
    a = round(fillAlpha);
    if (a < 0) a = 0;
    if (a > 255) a = 255;
    digits = "0123456789abcdef";
    hi = floor(a/16);
    lo = a-hi*16;
    fillAlphaHex = substring(digits, hi, hi+1) + substring(digits, lo, lo+1);
}

function setGroupColorVariables(group) {
    idx = (round(group)-1)%12;
    if (idx < 0) idx = 0;
    if (idx == 0) { activeStrokeColor="#ff3333"; activeFillColor="#"+fillAlphaHex+"ff3333"; }
    else if (idx == 1) { activeStrokeColor="#33cc33"; activeFillColor="#"+fillAlphaHex+"33cc33"; }
    else if (idx == 2) { activeStrokeColor="#3399ff"; activeFillColor="#"+fillAlphaHex+"3399ff"; }
    else if (idx == 3) { activeStrokeColor="#ff9900"; activeFillColor="#"+fillAlphaHex+"ff9900"; }
    else if (idx == 4) { activeStrokeColor="#cc66ff"; activeFillColor="#"+fillAlphaHex+"cc66ff"; }
    else if (idx == 5) { activeStrokeColor="#00cccc"; activeFillColor="#"+fillAlphaHex+"00cccc"; }
    else if (idx == 6) { activeStrokeColor="#ff66cc"; activeFillColor="#"+fillAlphaHex+"ff66cc"; }
    else if (idx == 7) { activeStrokeColor="#ffff00"; activeFillColor="#"+fillAlphaHex+"ffff00"; }
    else if (idx == 8) { activeStrokeColor="#999999"; activeFillColor="#"+fillAlphaHex+"999999"; }
    else if (idx == 9) { activeStrokeColor="#ffffff"; activeFillColor="#"+fillAlphaHex+"ffffff"; }
    else if (idx == 10) { activeStrokeColor="#cc9966"; activeFillColor="#"+fillAlphaHex+"cc9966"; }
    else { activeStrokeColor="#66ff99"; activeFillColor="#"+fillAlphaHex+"66ff99"; }
}

// -----------------------------------------------------------------------------
// Keyboard shortcuts, fixed navigation and view preservation
// -----------------------------------------------------------------------------

function lightInteractiveReadResizeStep() {
    js = "var P=Packages.ij.Prefs;String(P.get('cavity.tem.light.resize.step.nm'," + d2s(lightInteractiveResizeStepNm,6) + "));";
    raw = "" + eval("js", js);
    value = parseFloat(raw);
    if (isNaN(value)) value = 0.010;
    if (value < lightInteractiveResizeMinNm) value = lightInteractiveResizeMinNm;
    if (value > lightInteractiveResizeMaxNm) value = lightInteractiveResizeMaxNm;
    lightInteractiveResizeStepNm = value;
    return value;
}

function lightInteractiveSaveResizePreference() {
    if (lightInteractiveResizeStepNm < lightInteractiveResizeMinNm) lightInteractiveResizeStepNm = lightInteractiveResizeMinNm;
    if (lightInteractiveResizeStepNm > lightInteractiveResizeMaxNm) lightInteractiveResizeStepNm = lightInteractiveResizeMaxNm;
    js = "try{Packages.ij.Prefs.set('cavity.tem.light.resize.step.nm'," + d2s(lightInteractiveResizeStepNm,6) + ");Packages.ij.Prefs.savePreferences();'1';}catch(e){'0';}";
    prefResult = "" + eval("js", js);
    if (prefResult == "1") return 1;
    return 0;
}


function lightInteractivePushState(modeValue) {
    if (modeValue != "") lightInteractiveMode = modeValue;
    if (nImages() <= 0) return 0;
    lightInteractiveReadResizeStep();
    scaleOk = updateScaleMaybe();
    js = "var WM=Packages.ij.WindowManager,imp=WM.getCurrentImage();if(imp==null)'0';else{";
    js = js + "imp.setProperty('CavityV8NavActive','" + d2s(fixedNavigation,0) + "');";
    js = js + "imp.setProperty('CavityV8WheelPan','" + d2s(wheelPanFraction,8) + "');";
    js = js + "imp.setProperty('CavityV8KeyPan','" + d2s(keyPanFraction,8) + "');";
    js = js + "imp.setProperty('CavityV8ZoomStep','" + d2s(zoomStep,8) + "');";
    js = js + "imp.setProperty('CavityLightInteractionMode','" + jsEscape(lightInteractiveMode) + "');";
    js = js + "imp.setProperty('CavityLightActiveDiameterNm','" + d2s(activeDiameterNm,9) + "');";
    if (scaleOk == 1) {
        js = js + "imp.setProperty('CavityLightScaleXNm','" + d2s(nmPerPixelX,12) + "');";
        js = js + "imp.setProperty('CavityLightScaleYNm','" + d2s(nmPerPixelY,12) + "');";
    } else {
        js = js + "imp.setProperty('CavityLightScaleXNm','0');imp.setProperty('CavityLightScaleYNm','0');";
    }
    js = js + "imp.setProperty('CavityLightPreviewEnabled','" + d2s(lightInteractivePreviewEnabled,0) + "');";
    js = js + "imp.setProperty('CavityLightExactLabelsEnabled','" + d2s(showRoiLabels,0) + "');";
    js = js + "imp.setProperty('CavityLightActiveColor','" + jsEscape(activeStrokeColor) + "');";
    js = js + "imp.setProperty('CavityLightResizeStepNm','" + d2s(lightInteractiveResizeStepNm,6) + "');";
    js = js + "imp.setProperty('CavityLightResizeDebounceMs','" + d2s(lightInteractiveDebounceMs,0) + "');";
    js = js + "if('" + jsEscape(lightInteractiveMode) + "'!='add'){var ov=imp.getOverlay();if(ov!=null){try{ov.remove('__CTL_R8_CURSOR_PREVIEW__');}catch(e){}if(ov.size()==0&&String(imp.getProperty('CavityLightOwnPreviewOverlay'))=='1'){imp.setOverlay(null);imp.setProperty('CavityLightOwnPreviewOverlay',null);}else imp.setOverlay(ov);imp.draw();}}'1';}";
    resultText = "" + eval("js", js);
    if (resultText == "1") return 1;
    return 0;
}


function lightInteractiveRemovePreview() {
    if (nImages() <= 0) return;
    js = "var WM=Packages.ij.WindowManager,imp=WM.getCurrentImage();if(imp!=null){var ov=imp.getOverlay();if(ov!=null){try{ov.remove('__CTL_R8_CURSOR_PREVIEW__');}catch(e){}if(ov.size()==0&&String(imp.getProperty('CavityLightOwnPreviewOverlay'))=='1'){imp.setOverlay(null);imp.setProperty('CavityLightOwnPreviewOverlay',null);}else imp.setOverlay(ov);imp.draw();}}";
    eval("js", js);
}


function lightInteractivePullActiveDiameter() {
    if (nImages() <= 0) return 0;
    js = "var WM=Packages.ij.WindowManager,imp=WM.getCurrentImage();var v=imp==null?null:imp.getProperty('CavityLightActiveDiameterNm');v==null?'':String(v);";
    valueText = "" + eval("js", js);
    if (valueText == "") return 0;
    value = parseFloat(valueText);
    if (isNaN(value) || value <= 0) return 0;
    minDiameter = max2(nmPerPixelX, nmPerPixelY);
    if (minDiameter > 0 && value < minDiameter) value = minDiameter;
    activeDiameterNm = value;
    return 1;
}


function lightFinalizeInteractiveActiveDiameter() {
    if (nImages() <= 0) return;
    previousMode = lightInteractiveMode;
    pulled = lightInteractivePullActiveDiameter();
    if (pulled == 0) return;
    updateSessionMetadataRoi();
    lightWriteImageMetadata();
    lightUpdateRegistry();
    lightAppendLog("ACTIVE_DIAMETER_WHEEL_UPDATED", "diameter_nm="+lightNum(activeDiameterNm)+"; step_nm="+lightNum(lightInteractiveResizeStepNm)+"; mode="+previousMode);
    lightInteractivePushState(previousMode);
    if (previousMode == "add") activateMacroToolByPrefix("Cavity add");
    else if (previousMode == "select") activateMacroToolByPrefix("Cavity select edit");
    lightRefreshPanel();
    showStatus("Diametro activo actualizado: " + d2s(activeDiameterNm,4) + " nm. Alt+rueda cambia el circulo sin modificar el zoom.");
}


function lightUpdateResizeStepFromPreference() {
    oldStep = lightInteractiveResizeStepNm;
    lightInteractiveReadResizeStep();
    lightInteractiveSaveResizePreference();
    lightInteractivePushState(lightInteractiveMode);
    updateSessionMetadataRoi();
    lightWriteImageMetadata();
    lightRefreshPanel();
    if (lightNumberChanged(oldStep, lightInteractiveResizeStepNm) == 1) showStatus("Sensibilidad de ajuste: " + d2s(lightInteractiveResizeStepNm,3) + " nm por paso de rueda.");
}


function lightFinalizeInteractiveEdit() {
    if (nImages() <= 0) return;
    previousMode = lightInteractiveMode;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) return;
    safeRoiSelect(idx);
    if (!currentRoiIsCavity()) return;
    id = cavityIdCurrent();
    kind = "interactive";
    js = "var WM=Packages.ij.WindowManager,imp=WM.getCurrentImage();var v=imp==null?null:imp.getProperty('CavityLightPendingEditKind');if(imp!=null)imp.setProperty('CavityLightPendingEditKind',null);v==null?'interactive':String(v);";
    kindText = "" + eval("js", js);
    if (kindText != "") kind = kindText;
    Roi.setProperty("Interactive_edit_pending", "0");
    Roi.setProperty("Last_edit_method", kind);
    Roi.setProperty("Last_edit_ms", d2s(getTime(),0));
    Roi.setProperty("Duplicate_status", "pending_recheck");
    Roi.setProperty("Duplicate_partners", "");
    roiManager("update");
    syncCavityAtIndex(idx);
    safeRoiSelect(idx);
    lightLastInteractiveEditId = id;
    lightLastInteractiveEditKind = kind;
    lightLastInteractiveEditDiameterNm = propNumber("Equivalent_diameter_nm", NaN);
    lightInvalidateAnalysisCache();
    updateSessionMetadataRoi();
    overlayUpdated = lightRefreshSelectedRoiOverlay(idx);
    if (overlayUpdated == 0) showAllRois();
    lightInteractivePushState(previousMode);
    if (previousMode == "add") activateMacroToolByPrefix("Cavity add");
    else activateMacroToolByPrefix("Cavity select edit");
    refreshControlPanelStatus();
    showStatus(id + " actualizada automaticamente; d=" + d2s(lightLastInteractiveEditDiameterNm,4) + " nm. Duplicados se revisaran al validar.");
}


function installInteractionListeners(verbose) {
    // Prompt-1 replaces R9 ad-hoc threads/timers with the embedded serial
    // broker. The preserved implementation below is unreachable evidence.
    p1InstallInteractionListeners(verbose);
    return;
    if (nImages() <= 0) return;
    if (keepWindowSize == 1) {
        if (lockedWinW <= 0 || lockedWinH <= 0) lockWindowSizeToCurrent(0);
    }
    lightInteractiveReadResizeStep();
    lightInteractivePushState(lightInteractiveMode);
    js = "";
    js = js + "(function(){";
    js = js + "var IJ=Packages.ij.IJ,WM=Packages.ij.WindowManager,Rectangle=Packages.java.awt.Rectangle,ArrayList=Packages.java.util.ArrayList;";
    js = js + "var KeyEvent=Packages.java.awt.event.KeyEvent,KeyAdapter=Packages.java.awt.event.KeyAdapter,MouseWheelListener=Packages.java.awt.event.MouseWheelListener,MouseMotionListener=Packages.java.awt.event.MouseMotionListener,MouseAdapter=Packages.java.awt.event.MouseAdapter;";
    js = js + "var ActionListener=Packages.java.awt.event.ActionListener,Timer=Packages.javax.swing.Timer,Executer=Packages.ij.Executer,Runnable=Packages.java.lang.Runnable,Thread=Packages.java.lang.Thread;";
    js = js + "var RoiManager=Packages.ij.plugin.frame.RoiManager,Overlay=Packages.ij.gui.Overlay,OvalRoi=Packages.ij.gui.OvalRoi,Color=Packages.java.awt.Color,Toolbar=Packages.ij.gui.Toolbar;";
    js = js + "var imp=WM.getCurrentImage();if(imp==null)return 'NO_IMAGE';var win=imp.getWindow(),c=(win==null?null:win.getCanvas());if(c==null)return 'NO_CANVAS';";
    js = js + "var installedVersion=imp.getProperty('CavityLightWheelRouterVersion');if(installedVersion!=null&&String(installedVersion)=='1.1.1-R9-final')return 'ALREADY';";
    js = js + "var oldR8Wheel=null,oldR9Wheel=null;try{oldR8Wheel=imp.getProperty('CavityLightR8WheelListener');if(oldR8Wheel!=null)c.removeMouseWheelListener(oldR8Wheel);imp.setProperty('CavityLightR8WheelListener',null);}catch(ignoreR8Wheel){}";
    js = js + "try{oldR9Wheel=imp.getProperty('CavityLightR9WheelListener');if(oldR9Wheel!=null)c.removeMouseWheelListener(oldR9Wheel);imp.setProperty('CavityLightR9WheelListener',null);}catch(ignoreR9Wheel){}";
    js = js + "try{var oldMotion=imp.getProperty('CavityLightR8MotionListener');if(oldMotion!=null)c.removeMouseMotionListener(oldMotion);imp.setProperty('CavityLightR8MotionListener',null);}catch(ignoreMotion){}";
    js = js + "try{var oldMotion9=imp.getProperty('CavityLightR9MotionListener');if(oldMotion9!=null)c.removeMouseMotionListener(oldMotion9);imp.setProperty('CavityLightR9MotionListener',null);}catch(ignoreMotion9){}";
    js = js + "try{var oldMouse=imp.getProperty('CavityLightR8MouseListener');if(oldMouse!=null)c.removeMouseListener(oldMouse);imp.setProperty('CavityLightR8MouseListener',null);}catch(ignoreMouse){}";
    js = js + "try{var oldMouse9=imp.getProperty('CavityLightR9MouseListener');if(oldMouse9!=null)c.removeMouseListener(oldMouse9);imp.setProperty('CavityLightR9MouseListener',null);}catch(ignoreMouse9){}";
    js = js + "try{var oldKey=imp.getProperty('CavityLightR8KeyListener');if(oldKey!=null){c.removeKeyListener(oldKey);if(win!=null)win.removeKeyListener(oldKey);}imp.setProperty('CavityLightR8KeyListener',null);}catch(ignoreKey){}";
    js = js + "try{var oldKey9=imp.getProperty('CavityLightR9KeyListener');if(oldKey9!=null){c.removeKeyListener(oldKey9);if(win!=null)win.removeKeyListener(oldKey9);}imp.setProperty('CavityLightR9KeyListener',null);}catch(ignoreKey9){}";
    js = js + "var baseWheel=imp.getProperty('CavityLightBaseWheelListeners');if(baseWheel==null){baseWheel=new ArrayList();var currentWheel=c.getMouseWheelListeners();for(var bw=0;bw<currentWheel.length;bw++){var listener=currentWheel[bw];if(listener!=null&&listener!==oldR8Wheel&&listener!==oldR9Wheel)baseWheel.add(listener);}imp.setProperty('CavityLightBaseWheelListeners',baseWheel);}";
    js = js + "var remainingWheel=c.getMouseWheelListeners();for(var rw=0;rw<remainingWheel.length;rw++){try{c.removeMouseWheelListener(remainingWheel[rw]);}catch(ignoreRemoveBase){}}";
    js = js + "function num(key,def){var p=imp.getProperty(key);if(p==null)return def;var v=parseFloat(String(p));return isNaN(v)?def:v;}";
    js = js + "function str(key,def){var p=imp.getProperty(key);return p==null?def:String(p);}";
    js = js + "function navOn(){return str('CavityV8NavActive','0')=='1';}";
    js = js + "function mode(){return str('CavityLightInteractionMode','select');}";
    js = js + "function submit(cmd){var body={run:function(){IJ.resetEscape();new Executer(cmd).run();}};var r;if(typeof JavaAdapter!='undefined')r=new JavaAdapter(Runnable,body);else{var R=Java.extend(Runnable);r=new R(body);}var th=new Thread(r);th.setDaemon(true);th.start();}";
    js = js + "function adapter(iface,body){if(typeof JavaAdapter!='undefined')return new JavaAdapter(iface,body);var C=Java.extend(iface);return new C(body);}";
    js = js + "function isCavity(r){if(r==null)return false;var typ=r.getProperty('Type');if(typ==null||String(typ)=='')typ=r.getProperty('Object_type');return typ!=null&&String(typ)=='cavity';}";
    js = js + "function preciseRotation(e){var rot=e.getPreciseWheelRotation();if(!isFinite(rot)||rot==0)rot=e.getWheelRotation();return rot;}";
    js = js + "function delegateWheel(e){var base=imp.getProperty('CavityLightBaseWheelListeners');if(base==null)return;for(var i=0;i<base.size();i++){try{var listener=base.get(i);if(listener!=null)listener.mouseWheelMoved(e);}catch(ignoreDelegate){}}}";
    js = js + "function removePreview(){var ov=imp.getOverlay();if(ov==null)return;try{ov.remove('__CTL_R8_CURSOR_PREVIEW__');}catch(ex){}var own=str('CavityLightOwnPreviewOverlay','0')=='1';if(own&&ov.size()==0){imp.setOverlay(null);imp.setProperty('CavityLightOwnPreviewOverlay',null);}else imp.setOverlay(ov);imp.draw();}";
    js = js + "function colorFromHex(h){try{return Color.decode(String(h));}catch(ex){return Color.yellow;}}";
    js = js + "function updatePreview(e){var toolName=String(Toolbar.getToolName()).toLowerCase();if(mode()!='add'||str('CavityLightPreviewEnabled','1')!='1'||toolName.indexOf('cavity')<0||toolName.indexOf('add')<0){removePreview();return;}var d=num('CavityLightActiveDiameterNm',0),sx=num('CavityLightScaleXNm',0),sy=num('CavityLightScaleYNm',0);if(!(d>0&&sx>0&&sy>0)){removePreview();return;}var x=c.offScreenXD(e.getX()),y=c.offScreenYD(e.getY()),rw=d/sx,rh=d/sy;var ov=imp.getOverlay();if(ov==null){ov=new Overlay();imp.setProperty('CavityLightOwnPreviewOverlay','1');}try{ov.remove('__CTL_R8_CURSOR_PREVIEW__');}catch(ex2){}var preview=new OvalRoi(x-rw/2.0,y-rh/2.0,rw,rh);preview.setName('__CTL_R8_CURSOR_PREVIEW__');preview.setStrokeColor(colorFromHex(str('CavityLightActiveColor','#ffff00')));preview.setStrokeWidth(1.5);preview.setFillColor(null);ov.add(preview);imp.setOverlay(ov);c.repaint();}";
    js = js + "function refreshShowAll(idx,r){var ov=c.getShowAllList();var rm=RoiManager.getInstance2();if(ov==null||rm==null||ov.size()!=rm.getCount()||idx<0||idx>=ov.size())return false;var labels=str('CavityLightExactLabelsEnabled','1')=='1';ov.set(r,idx);ov.drawLabels(labels);ov.drawNames(labels);try{ov.selectable(false);}catch(ignoreSelectable){}try{ov.setDraggable(false);}catch(ignoreDraggable){}try{ov.setLabelFontSize(12,'bold background');}catch(ignoreFont){}c.repaint();imp.draw();return true;}";
    js = js + "function pan(dx,dy){var w=imp.getWindow();if(w==null)return;var cc=w.getCanvas();if(cc==null)return;cc.setScaleToFit(false);var r=cc.getSrcRect();var iw=imp.getWidth(),ih=imp.getHeight();var nx=Math.round(r.x+r.width*dx),ny=Math.round(r.y+r.height*dy);if(nx<0)nx=0;if(ny<0)ny=0;if(nx>iw-r.width)nx=iw-r.width;if(ny>ih-r.height)ny=ih-r.height;if(nx<0)nx=0;if(ny<0)ny=0;var s=cc.getSize();if(s.width>0&&s.height>0)cc.setSize(s.width,s.height);cc.setSourceRect(new Rectangle(nx,ny,r.width,r.height));cc.repaint();imp.updateAndDraw();}";
    js = js + "function zoom(dir){var w=imp.getWindow();if(w==null)return;var cc=w.getCanvas();if(cc==null)return;cc.setScaleToFit(false);var r=cc.getSrcRect();var iw=imp.getWidth(),ih=imp.getHeight();var step=num('CavityV8ZoomStep',1.5);if(step<=1.01)step=1.5;var factor=dir>0?step:1.0/step;var oldMag=cc.getMagnification(),newMag=oldMag*factor;if(newMag>32)newMag=32;if(newMag<0.00390625)newMag=0.00390625;var s=cc.getSize(),dw=s.width,dh=s.height;if(dw<=0||dh<=0){dw=Math.round(r.width*oldMag);dh=Math.round(r.height*oldMag);}if(dw>0&&dh>0)cc.setSize(dw,dh);var cx=r.x+r.width/2.0,cy=r.y+r.height/2.0;var nw=Math.ceil(dw/newMag),nh=Math.ceil(dh/newMag);if(nw<1)nw=1;if(nh<1)nh=1;if(nw>iw)nw=iw;if(nh>ih)nh=ih;var nx=Math.round(cx-nw/2.0),ny=Math.round(cy-nh/2.0);if(nx<0)nx=0;if(ny<0)ny=0;if(nx>iw-nw)nx=iw-nw;if(ny>ih-nh)ny=ih-nh;if(nx<0)nx=0;if(ny<0)ny=0;cc.setSourceRect(new Rectangle(nx,ny,nw,nh));cc.repaint();imp.updateAndDraw();}";
    js = js + "var resizeTimer=null;function queueCommit(kind){imp.setProperty('CavityLightPendingEditKind',kind);var delay=Math.round(num('CavityLightResizeDebounceMs',350));if(delay<100)delay=100;if(resizeTimer==null){resizeTimer=new Timer(delay,adapter(ActionListener,{actionPerformed:function(ev){submit('Cavity Light: confirmar edicion interactiva');}}));resizeTimer.setRepeats(false);}resizeTimer.setInitialDelay(delay);resizeTimer.restart();}";
    js = js + "var activeDiameterTimer=null;function queueActiveDiameterCommit(){var delay=Math.round(num('CavityLightResizeDebounceMs',350));if(delay<100)delay=100;if(activeDiameterTimer==null){activeDiameterTimer=new Timer(delay,adapter(ActionListener,{actionPerformed:function(ev){submit('Cavity Light: confirmar diametro activo interactivo');}}));activeDiameterTimer.setRepeats(false);}activeDiameterTimer.setInitialDelay(delay);activeDiameterTimer.restart();}";
    js = js + "function resizedRoi(base,x,y,w,h){var nr=new OvalRoi(x,y,w,h);nr.copyAttributes(base);var props=base.getProperties();if(props!=null)nr.setProperties(props);nr.setName(base.getName());try{nr.setGroup(base.getGroup());}catch(ignoreGroup){}try{nr.setPosition(base.getCPosition(),base.getZPosition(),base.getTPosition());}catch(ignorePosition){}return nr;}";
    js = js + "function adjustActiveDiameter(e){var oldD=num('CavityLightActiveDiameterNm',0),sx=num('CavityLightScaleXNm',0),sy=num('CavityLightScaleYNm',0),step=num('CavityLightResizeStepNm',0.010),rot=preciseRotation(e);if(!(oldD>0&&sx>0&&sy>0&&step>0&&isFinite(rot)&&rot!=0))return false;var newD=oldD-rot*step,minD=Math.max(sx,sy);if(newD<minD)newD=minD;var maxD=Math.max(imp.getWidth()*sx,imp.getHeight()*sy);if(maxD>0&&newD>maxD)newD=maxD;imp.setProperty('CavityLightActiveDiameterNm',String(newD));imp.setProperty('CavityLightPendingActiveDiameterNm',String(newD));updatePreview(e);IJ.showStatus('Diametro activo: '+newD.toFixed(4)+' nm; paso='+step.toFixed(4)+' nm. Alt+rueda no cambia el zoom.');queueActiveDiameterCommit();return true;}";
    js = js + "function resizeSelected(e){var rm=RoiManager.getInstance2();if(rm==null)return false;var idx=rm.getSelectedIndex();if(idx<0||idx>=rm.getCount())return false;var base=imp.getRoi();if(base==null||!isCavity(base))base=rm.getRoi(idx);if(!isCavity(base))return false;var b=base.getFloatBounds(),sx=num('CavityLightScaleXNm',0),sy=num('CavityLightScaleYNm',0);if(!(sx>0&&sy>0&&b.width>0&&b.height>0))return false;var oldD=Math.sqrt((b.width*sx)*(b.height*sy)),step=num('CavityLightResizeStepNm',0.010),rot=preciseRotation(e);if(!(oldD>0&&step>0&&isFinite(rot)&&rot!=0))return false;var newD=oldD-rot*step,minD=Math.max(sx,sy);if(newD<minD)newD=minD;var factor=newD/oldD,nw=b.width*factor,nh=b.height*factor,cx=b.x+b.width/2.0,cy=b.y+b.height/2.0,nr=resizedRoi(base,cx-nw/2.0,cy-nh/2.0,nw,nh),kind=e.isControlDown()?'ctrl_alt_wheel':'alt_wheel';nr.setProperty('Interactive_edit_pending','1');nr.setProperty('Last_edit_method',kind);nr.setProperty('Last_edit_ms',String(java.lang.System.currentTimeMillis()));rm.setRoi(nr,idx);rm.select(imp,idx);imp.setRoi(nr);refreshShowAll(idx,nr);imp.draw();IJ.showStatus(String(nr.getName())+': d='+newD.toFixed(4)+' nm; paso='+step.toFixed(4)+' nm');queueCommit(kind);return true;}";
    js = js + "var pressedIndex=-1,pressedName='',pressedBounds=null;";
    js = js + "var wheelBody={mouseWheelMoved:function(e){var alt=e.isAltDown(),ctrl=e.isControlDown()||e.isMetaDown(),currentMode=mode();if(alt){var handled=false;if(currentMode=='add')handled=adjustActiveDiameter(e);else if(currentMode=='select')handled=resizeSelected(e);if(!handled){if(currentMode=='select')IJ.showStatus('Alt+rueda: selecciona primero una cavidad. El zoom no se ha modificado.');else if(currentMode=='add')IJ.showStatus('Alt+rueda: define antes un diametro activo y una escala valida.');}e.consume();return;}if(navOn()){var rot=e.getWheelRotation();if(ctrl){if(rot<0)zoom(1);else if(rot>0)zoom(-1);}else{var f=num('CavityV8WheelPan',0.18);if(e.isShiftDown())pan(rot*f,0);else pan(0,rot*f);}e.consume();return;}delegateWheel(e);}};";
    js = js + "var motionBody={mouseMoved:function(e){updatePreview(e);},mouseDragged:function(e){if(mode()=='add')updatePreview(e);}};";
    js = js + "var mouseBody={mousePressed:function(e){pressedIndex=-1;pressedName='';pressedBounds=null;if(mode()!='select')return;var rm=RoiManager.getInstance2();if(rm==null)return;var idx=rm.getSelectedIndex();if(idx<0||idx>=rm.getCount())return;var r=rm.getRoi(idx);if(!isCavity(r))return;pressedIndex=idx;pressedName=String(r.getName());pressedBounds=r.getFloatBounds();},mouseReleased:function(e){if(pressedIndex<0||pressedBounds==null)return;var rm=RoiManager.getInstance2(),idx=pressedIndex;pressedIndex=-1;if(rm==null||idx>=rm.getCount())return;var active=imp.getRoi();if(!isCavity(active))return;if(String(active.getName())!=pressedName)active.setName(pressedName);var b=active.getFloatBounds(),eps=0.0001,changed=Math.abs(b.x-pressedBounds.x)>eps||Math.abs(b.y-pressedBounds.y)>eps||Math.abs(b.width-pressedBounds.width)>eps||Math.abs(b.height-pressedBounds.height)>eps;if(!changed)return;var nr=active.clone();nr.setName(pressedName);nr.setProperty('Interactive_edit_pending','1');nr.setProperty('Last_edit_method','mouse_drag_or_handles');nr.setProperty('Last_edit_ms',String(java.lang.System.currentTimeMillis()));rm.setRoi(nr,idx);rm.select(imp,idx);imp.setRoi(nr);refreshShowAll(idx,nr);imp.draw();imp.setProperty('CavityLightPendingEditKind','mouse_drag_or_handles');submit('Cavity Light: confirmar edicion interactiva');},mouseExited:function(e){removePreview();},mouseClicked:function(e){},mouseEntered:function(e){}};";
    js = js + "var keyBody={keyPressed:function(e){var code=e.getKeyCode(),ctrl=e.isControlDown()||e.isMetaDown(),shift=e.isShiftDown(),cmd=null;if(ctrl&&shift&&code==KeyEvent.VK_V)cmd='Cavity Light: validar imagen';else if(ctrl&&shift&&code==KeyEvent.VK_E)cmd='Cavity Light: calcular y exportar resultados';else if(ctrl&&code==KeyEvent.VK_H)cmd='Cavity Light: ayuda';else if(ctrl&&code==KeyEvent.VK_K)cmd='Cavity Light: calibrar escala con linea';else if(ctrl&&code==KeyEvent.VK_B)cmd='Cavity Light: definir superficie';else if(ctrl&&code==KeyEvent.VK_M)cmd='Cavity Light: medir diametro y crear cavidad';else if(ctrl&&code==KeyEvent.VK_R)cmd='Cavity Light: anadir con diametro activo';else if(ctrl&&code==KeyEvent.VK_E)cmd='Cavity Light: seleccionar/editar';else if(ctrl&&code==KeyEvent.VK_U)cmd='Cavity Light: sincronizar seleccionada';else if(ctrl&&code==KeyEvent.VK_T)cmd='Cavity Light: buscar duplicados';else if(ctrl&&code==KeyEvent.VK_G)cmd='Cavity Light: dibujar bordes de grano';else if(ctrl&&code==KeyEvent.VK_L)cmd='Cavity Light: dibujar dislocaciones';else if(ctrl&&code==KeyEvent.VK_S)cmd='Cavity Light: guardar nueva revision';else if(ctrl&&code==KeyEvent.VK_Z)cmd='Cavity Light: deshacer ultima accion';else if(code==KeyEvent.VK_ESCAPE){removePreview();cmd='Cavity Light: seleccionar/editar';}else if(code==KeyEvent.VK_DELETE||code==KeyEvent.VK_BACK_SPACE)cmd='Cavity Light: borrar seleccionada';if(cmd!=null){submit(cmd);e.consume();return;}if(navOn()){var f=num('CavityV8KeyPan',0.30);if(shift)f*=2.0;if(e.isAltDown())f*=0.25;if(code==KeyEvent.VK_LEFT){pan(-f,0);e.consume();}else if(code==KeyEvent.VK_RIGHT){pan(f,0);e.consume();}else if(code==KeyEvent.VK_UP){pan(0,-f);e.consume();}else if(code==KeyEvent.VK_DOWN){pan(0,f);e.consume();}}}};";
    js = js + "var wl=adapter(MouseWheelListener,wheelBody),ml=adapter(MouseMotionListener,motionBody),ma=adapter(MouseAdapter,mouseBody),kl=adapter(KeyAdapter,keyBody);c.addMouseWheelListener(wl);c.addMouseMotionListener(ml);c.addMouseListener(ma);c.addKeyListener(kl);win.addKeyListener(kl);c.setFocusable(true);c.requestFocusInWindow();imp.setProperty('CavityLightR9WheelListener',wl);imp.setProperty('CavityLightR9MotionListener',ml);imp.setProperty('CavityLightR9MouseListener',ma);imp.setProperty('CavityLightR9KeyListener',kl);imp.setProperty('CavityV8ListenersInstalled','1');imp.setProperty('CavityLightWheelRouterVersion','1.1.1-R9-final');imp.setProperty('CavityV8ListenersVersion','1.1.1-R9-final');return 'INSTALLED';";
    js = js + "})()";
    statusText = "" + eval("js", js);
    lightInteractiveControllerStatus = statusText;
    lightInteractivePushState(lightInteractiveMode);
    if (verbose) showStatus("Interaccion R9: " + statusText + "; Alt+rueda=" + d2s(lightInteractiveResizeStepNm,3) + " nm/paso; Ctrl+Alt compatible.");
}


function snapshotCurrentView() {
    if (!restoreViewAfterRoi || nImages() <= 0) return;
    getDisplayedArea(viewSnapX, viewSnapY, viewSnapW, viewSnapH);
    getLocationAndSize(viewSnapWinX, viewSnapWinY, viewSnapWinW, viewSnapWinH);
    if (viewSnapW <= 0 || viewSnapH <= 0) { viewSnapshotValid=0; return; }
    viewSnapshotValid = 1;
}

function restoreViewSnapshot() {
    if (!restoreViewAfterRoi || !viewSnapshotValid || nImages() <= 0) return;
    if (viewSnapWinW > 0 && viewSnapWinH > 0) {
        setLocation(viewSnapWinX, viewSnapWinY, viewSnapWinW, viewSnapWinH);
        lockedWinW = viewSnapWinW;
        lockedWinH = viewSnapWinH;
        wait(40);
    }
    jsRestoreViewRect(viewSnapX, viewSnapY, viewSnapW, viewSnapH);
    viewSnapshotValid = 0;
}

function jsRestoreViewRect(x, y, w, h) {
    if (w <= 0 || h <= 0) return;
    js = "var IJ=Packages.ij.IJ;var Rectangle=Packages.java.awt.Rectangle;var imp=IJ.getImage();if(imp!=null){var win=imp.getWindow();if(win!=null){var c=win.getCanvas();if(c!=null){var iw=imp.getWidth(),ih=imp.getHeight();var x="+d2s(x,6)+",y="+d2s(y,6)+",w="+d2s(w,6)+",h="+d2s(h,6)+";if(w>iw)w=iw;if(h>ih)h=ih;if(x<0)x=0;if(y<0)y=0;if(x>iw-w)x=iw-w;if(y>ih-h)y=ih-h;c.setScaleToFit(false);c.setSourceRect(new Rectangle(Math.round(x),Math.round(y),Math.round(w),Math.round(h)));c.repaint();imp.updateAndDraw();}}}";
    eval("js", js);
}

function lockWindowSizeToCurrent(verbose) {
    if (nImages() <= 0) return;
    getLocationAndSize(wx, wy, ww, wh);
    lockedWinW = ww;
    lockedWinH = wh;
    keepWindowSize = 1;
    if (verbose) showStatus("Tamano de ventana fijado: " + ww + " x " + wh + " px.");
}

function ensureLockedWindowSizeBeforeViewChange() {
    if (!keepWindowSize || nImages() <= 0) return;
    if (lockedWinW <= 0 || lockedWinH <= 0) lockWindowSizeToCurrent(0);
    if (lockedWinW <= 0 || lockedWinH <= 0) return;
    getLocationAndSize(wx, wy, ww, wh);
    if (abs(ww-lockedWinW)>1 || abs(wh-lockedWinH)>1) {
        setLocation(wx, wy, lockedWinW, lockedWinH);
        wait(40);
    }
}

function zoomInFixed() { zoomViewCentered(zoomStep); }
function zoomOutFixed() { zoomViewCentered(1.0/zoomStep); }

function zoomViewCentered(factor) {
    if (nImages() <= 0 || factor <= 0) return;
    ensureLockedWindowSizeBeforeViewChange();
    getDisplayedArea(x, y, w, h);
    jsZoomView(x+w/2, y+h/2, factor);
    showAllRois();
}

function jsZoomView(cx, cy, factor) {
    js = "var IJ=Packages.ij.IJ;var Rectangle=Packages.java.awt.Rectangle;var imp=IJ.getImage();if(imp!=null){var win=imp.getWindow();if(win!=null){var c=win.getCanvas();if(c!=null){c.setScaleToFit(false);var r=c.getSrcRect(),s=c.getSize(),iw=imp.getWidth(),ih=imp.getHeight();var factor="+d2s(factor,12)+",cx="+d2s(cx,6)+",cy="+d2s(cy,6)+";var oldMag=c.getMagnification(),newMag=oldMag*factor;if(newMag>32)newMag=32;if(newMag<0.00390625)newMag=0.00390625;var dw=s.width,dh=s.height;if(dw<=0||dh<=0){dw=Math.round(r.width*oldMag);dh=Math.round(r.height*oldMag);}if(dw>0&&dh>0)c.setSize(dw,dh);var nw=Math.ceil(dw/newMag),nh=Math.ceil(dh/newMag);if(nw<1)nw=1;if(nh<1)nh=1;if(nw>iw)nw=iw;if(nh>ih)nh=ih;var nx=Math.round(cx-nw/2),ny=Math.round(cy-nh/2);if(nx<0)nx=0;if(ny<0)ny=0;if(nx>iw-nw)nx=iw-nw;if(ny>ih-nh)ny=ih-nh;if(nx<0)nx=0;if(ny<0)ny=0;c.setSourceRect(new Rectangle(nx,ny,nw,nh));c.repaint();imp.updateAndDraw();}}}";
    eval("js", js);
}

function panView(dxFraction, dyFraction) {
    if (nImages() <= 0) return;
    ensureLockedWindowSizeBeforeViewChange();
    js = "var IJ=Packages.ij.IJ;var Rectangle=Packages.java.awt.Rectangle;var imp=IJ.getImage();if(imp!=null){var win=imp.getWindow();if(win!=null){var c=win.getCanvas();if(c!=null){c.setScaleToFit(false);var r=c.getSrcRect(),iw=imp.getWidth(),ih=imp.getHeight();var nx=Math.round(r.x+r.width*("+d2s(dxFraction,12)+")),ny=Math.round(r.y+r.height*("+d2s(dyFraction,12)+"));if(nx<0)nx=0;if(ny<0)ny=0;if(nx>iw-r.width)nx=iw-r.width;if(ny>ih-r.height)ny=ih-r.height;if(nx<0)nx=0;if(ny<0)ny=0;c.setSourceRect(new Rectangle(nx,ny,r.width,r.height));c.repaint();imp.updateAndDraw();}}}";
    eval("js", js);
    showAllRois();
}

function v4ToggleImageAspectLock() {
    current = call("ij.Prefs.get", "cavity.v5.ui.image.aspect", "0");
    enabled = 1;
    if (current == "1") enabled = 0;
    call("ij.Prefs.set", "cavity.v5.ui.image.aspect", "" + enabled);
    v4InstallImageAspectLock(enabled);
    refreshControlPanelStatus();
    if (enabled) showStatus("Relacion de aspecto de la ventana de imagen bloqueada.");
    else showStatus("Relacion de aspecto de la ventana de imagen libre.");
}

function v4InstallImageAspectLock(enabled) {
    if (nImages() <= 0) {
        if (enabled) showMessage("Sin imagen", "Abra el montaje antes de bloquear la proporcion de su ventana.");
        return;
    }
    js = "var IJ=Packages.ij.IJ;var ComponentAdapter=Packages.java.awt.event.ComponentAdapter;var imp=IJ.getImage(),enable=" + enabled + ";if(imp!=null){var w=imp.getWindow();if(w!=null){var old=imp.getProperty('CavityV5AspectListener');if(old!=null)try{w.removeComponentListener(old);}catch(ignore){}imp.setProperty('CavityV5AspectListener',null);if(enable){var ratio=imp.getWidth()/imp.getHeight(),guard=false,lastW=w.getWidth(),lastH=w.getHeight();var body={componentResized:function(e){if(guard||ratio<=0)return;try{var nw=w.getWidth(),nh=w.getHeight(),ins=w.getInsets(),extraW=ins.left+ins.right,extraH=ins.top+ins.bottom,innerW=Math.max(160,nw-extraW),innerH=Math.max(120,nh-extraH),targetW=nw,targetH=nh;if(Math.abs(nw-lastW)>=Math.abs(nh-lastH))targetH=Math.round(innerW/ratio)+extraH;else targetW=Math.round(innerH*ratio)+extraW;if(targetW<240)targetW=240;if(targetH<180)targetH=180;if(Math.abs(targetW-nw)>1||Math.abs(targetH-nh)>1){guard=true;w.setSize(targetW,targetH);guard=false;}lastW=w.getWidth();lastH=w.getHeight();}catch(ex){guard=false;IJ.log('Cavity aspect lock: '+ex);}}};var listener;if(typeof JavaAdapter!='undefined')listener=new JavaAdapter(ComponentAdapter,body);else{var C=Java.extend(ComponentAdapter);listener=new C(body);}w.addComponentListener(listener);imp.setProperty('CavityV5AspectListener',listener);}}}";
    eval("js", js);
}

// -----------------------------------------------------------------------------
// General utilities and type helpers
// -----------------------------------------------------------------------------

function updateScaleMaybe() {
    if (nImages() <= 0) return 0;
    getPixelSize(unit, pw, ph);
    factor = unitToNmFactor(unit);
    if (factor <= 0) return 0;
    currentUnit = unit;
    unitFactorNm = factor;
    nmPerPixelX = pw*factor;
    nmPerPixelY = ph*factor;
    if (nmPerPixelX <= 0 || nmPerPixelY <= 0) return 0;
    return 1;
}

function updateScaleOrExit() {
    if (!updateScaleMaybe()) exit("La imagen no esta calibrada en nm, um, mm, cm o m. Usa el boton Escala (Ctrl+K) o carga una sesion v8.");
}

function unitToNmFactor(unit) {
    u = toLowerCase(unit);
    if (u == "nm" || u == "nanometer" || u == "nanometers" || u == "nanometre" || u == "nanometres") return 1;
    if (u == "um" || u == "micron" || u == "microns" || u == "micrometer" || u == "micrometers" || u == "micrometre" || u == "micrometres") return 1000;
    if (unit == fromCharCode(181)+"m" || unit == fromCharCode(956)+"m") return 1000;
    if (u == "angstrom" || u == "angstroms" || u == fromCharCode(197)) return 0.1;
    if (u == "pm" || u == "picometer" || u == "picometers") return 0.001;
    if (u == "mm") return 1000000;
    if (u == "cm") return 10000000;
    if (u == "m") return 1000000000;
    return -1;
}

function normalizedType(name, type) {
    t = toLowerCase(type);
    n = toLowerCase(name);
    if (t == "bubble") return "cavity";
    if (t == "analysis_area") return "analysis_mask";
    if (t == "surface") return "surface_reference";
    if (t != "") return t;
    if (startsWith(n, "cav_") || startsWith(n, "b_") || startsWith(n, "bubble")) return "cavity";
    if (startsWith(n, "panel_")) return "panel";
    if (startsWith(n, "mask_")) return "analysis_mask";
    if (startsWith(n, "area_")) return "analysis_mask";
    if (startsWith(n, "excl_")) return "exclusion";
    if (startsWith(n, "gb_")) return "grain_boundary";
    if (startsWith(n, "disl_")) return "dislocation";
    if (startsWith(n, "loop_")) return "dislocation_loop";
    if (startsWith(n, "int_")) return "interface";
    if (n == toLowerCase(scaleReferenceName)) return "scale_reference";
    if (n == toLowerCase(scaleLabelName)) return "scale_label";
    if (startsWith(n, toLowerCase(surfaceReferenceName))) return "surface_reference";
    if (n == toLowerCase(sessionMetadataName) || n == toLowerCase(legacyMetadataName)) return "session_metadata";
    return "";
}

function isCavityRoi(name, type) {
    normalized = normalizedType(name, type);
    if (normalized == "cavity") return 1;
    return 0;
}

// Roi.getName is a VARIABLE_FUNCTION in the ImageJ macro interpreter. Passing
// it directly as an argument to a user function can make the interpreter expect
// a numeric value. Read the ROI strings first, then pass ordinary variables.
function currentRoiType() {
    currentName = Roi.getName;
    currentStoredType = Roi.getProperty("Type");
    currentTypeValue = normalizedType(currentName, currentStoredType);
    return currentTypeValue;
}

function currentRoiIsCavity() {
    currentTypeValue = currentRoiType();
    if (currentTypeValue == "cavity") return 1;
    return 0;
}

function isLinearFeatureType(type) {
    if (type == "grain_boundary" || type == "dislocation" || type == "interface") return 1;
    return 0;
}

function isManagedType(type) {
    if (type == "cavity" || type == "panel" || type == "analysis_mask" || type == "exclusion") return 1;
    if (type == "dislocation_loop") return 1;
    if (isLinearFeatureType(type)) return 1;
    if (type == "scale_reference" || type == "scale_label" || type == "surface_reference" || type == "session_metadata") return 1;
    return 0;
}

function countTypeFast(wantedType) {
    if (nImages() <= 0) return 0;
    wantedText = "" + wantedType;
    wantedJs = jsEscape(wantedText);
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),wanted='" + wantedJs + "',count=0;function typ(r){var t=r.getProperty('Type');if(t==null||String(t)=='')t=r.getProperty('Object_type');return t==null?'':String(t);}for(var i=0;i<rois.length;i++){if(typ(rois[i])==wanted)count++;}return String(count);})();";
    result = "" + eval("js", js);
    value = parseFloat(result);
    if (isNaN(value)) return 0;
    return round(value);
}

function lightCavityCountCached() {
    if (lightCachedCavityCount < 0) lightCachedCavityCount = countTypeFast("cavity");
    return lightCachedCavityCount;
}

function lightInvalidateCavityCount() {
    lightCachedCavityCount = -1;
}


function lightRefreshObjectCounts() {
    lightObjectCountCavities = 0;
    lightObjectCountMasks = 0;
    lightObjectCountExclusions = 0;
    lightObjectCountGrainBoundaries = 0;
    lightObjectCountDislocations = 0;
    lightObjectCountInterfaces = 0;
    lightObjectCountSurfaces = 0;
    lightObjectCountDuplicateSuspects = 0;
    if (nImages() <= 0) return 0;
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),c=[0,0,0,0,0,0,0,0];function val(r,k){var v=r.getProperty(k);return v==null?'':String(v);}function typ(r){var t=val(r,'Type');if(t=='')t=val(r,'Object_type');return t;}for(var i=0;i<rois.length;i++){var r=rois[i],t=typ(r);if(t=='cavity'){c[0]++;if(val(r,'Duplicate_status')=='suspect')c[7]++;}else if(t=='analysis_mask')c[1]++;else if(t=='exclusion')c[2]++;else if(t=='grain_boundary')c[3]++;else if(t=='dislocation')c[4]++;else if(t=='interface')c[5]++;else if(t=='surface_reference')c[6]++;}return c.join('|');})();";
    result = "" + eval("js", js);
    parts = split(result, "|");
    if (parts.length < 8) return 0;
    lightObjectCountCavities = round(parseFloat(parts[0]));
    lightObjectCountMasks = round(parseFloat(parts[1]));
    lightObjectCountExclusions = round(parseFloat(parts[2]));
    lightObjectCountGrainBoundaries = round(parseFloat(parts[3]));
    lightObjectCountDislocations = round(parseFloat(parts[4]));
    lightObjectCountInterfaces = round(parseFloat(parts[5]));
    lightObjectCountSurfaces = round(parseFloat(parts[6]));
    lightObjectCountDuplicateSuspects = round(parseFloat(parts[7]));
    lightCachedCavityCount = lightObjectCountCavities;
    return 1;
}

function lightAuditCavitiesFast() {
    if (nImages() <= 0) return "ERROR";
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),o=[0,0,0,0,0,0,0,0,0,0,0,0,0],seen={};function val(r,k){var v=r.getProperty(k);return v==null?'':String(v);}function typ(r){var t=val(r,'Type');if(t=='')t=val(r,'Object_type');return t;}function iv(v,d){var n=parseInt(v,10);return isFinite(n)?n:d;}function pad(n){var x=String(n);while(x.length<6)x='0'+x;return 'CAV_'+x;}function cls(v){v=String(v||'confirmed').toLowerCase().replace(/ /g,'_');if(v=='confirmada')v='confirmed';if(v=='dudosa'||v=='doubtful'||v=='posible')v='uncertain';if(v=='artifact'||v=='artefacto'||v=='not_cavity')v='possible_artifact';return v;}for(var i=0;i<rois.length;i++){var r=rois[i];if(typ(r)!='cavity')continue;o[0]++;var count=iv(val(r,'Count_valid'),0),size=iv(val(r,'Size_valid'),0),edge=iv(val(r,'Edge_intersecting'),0);if(count==1)o[1]++;if(size==1)o[2]++;if(edge==1)o[3]++;if(val(r,'Duplicate_status')=='suspect')o[4]++;var c=cls(val(r,'Cavity_class'));if(c=='confirmed'){o[5]++;if(count==1)o[9]++;}else if(c=='uncertain'){o[6]++;if(count==1)o[10]++;}else if(c=='possible_artifact')o[7]++;else o[8]++;var id=val(r,'Cavity_id'),serial=iv(val(r,'Cavity_serial'),-1),expected=serial>0?pad(serial):'';if(serial<1||id!=expected||String(r.getName()||'')!=expected)o[11]++;var key='$'+id;if(seen[key])o[12]++;else seen[key]=1;}return o.join('|');})();";
    return "" + eval("js", js);
}

function lightAppendRoiToShowAll(idx) {
    if (nImages() <= 0) return 0;
    js = "(function(){var WM=Packages.ij.WindowManager,RM=Packages.ij.plugin.frame.RoiManager,imp=WM.getCurrentImage(),rm=RM.getInstance2(),idx="+idx+",labels="+showRoiLabels+"==1;if(imp==null||rm==null||idx<0||idx>=rm.getCount())return '0';var c=imp.getCanvas(),ov=c==null?null:c.getShowAllList();if(ov==null||ov.size()!=rm.getCount()-1)return '0';var r=rm.getRoi(idx);if(r==null)return '0';ov.add(r);ov.drawLabels(labels);ov.drawNames(labels);try{ov.selectable(false);}catch(ignoreSelectable){}try{ov.setDraggable(false);}catch(ignoreDraggable){}try{ov.setLabelFontSize(12,'bold background');}catch(e){}c.repaint();imp.draw();return '1';})()";
    result = "" + eval("js", js);
    if (result == "1") return 1;
    return 0;
}

function lightCheckNewCavityDuplicatesFast(newIdx) {
    if (nImages() <= 0) return "";
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),idx="+newIdx+",tolPx="+d2s(duplicateCenterTolPx,8)+",tolRel="+d2s(duplicateRelativeTol,8)+",tolD="+d2s(duplicateDiameterTolFraction,8)+",sx="+d2s(nmPerPixelX,12)+",sy="+d2s(nmPerPixelY,12)+";if(rm==null||idx<0||idx>=rm.getCount())return '';function val(r,k){var v=r.getProperty(k);return v==null?'':String(v);}function typ(r){var t=val(r,'Type');if(t=='')t=val(r,'Object_type');return t;}function add(list,id){if(!id)return list;var a=list?list.split(';'):[];for(var q=0;q<a.length;q++)if(a[q]==id)return list;return list?list+';'+id:id;}function geom(r){var b=r.getFloatBounds(),cx=b.x+b.width/2,cy=b.y+b.height/2,dpx=Math.sqrt(b.width*b.height),dnm=Math.sqrt((b.width*sx)*(b.height*sy));return [cx,cy,dpx,dnm];}function likely(a,b){var dx=a[0]-b[0],dy=a[1]-b[1],dist=Math.sqrt(dx*dx+dy*dy),tol=Math.max(tolPx,tolRel*Math.min(a[2],b[2])),mx=Math.max(a[3],b[3]),diff=mx>0?Math.abs(a[3]-b[3])/mx:0;return (dist<=tol&&diff<=tolD)||dist<=tolPx*0.5;}var nr=rm.getRoi(idx);if(typ(nr)!='cavity')return '';var ng=geom(nr),nid=val(nr,'Cavity_id')||String(nr.getName()||''),partners='';for(var i=0;i<rm.getCount();i++){if(i==idx)continue;var r=rm.getRoi(i);if(typ(r)!='cavity')continue;if(likely(ng,geom(r))){var id=val(r,'Cavity_id')||String(r.getName()||'');partners=add(partners,id);r.setProperty('Duplicate_status','suspect');r.setProperty('Duplicate_partners',add(val(r,'Duplicate_partners'),nid));rm.setRoi(r,i);}}nr.setProperty('Duplicate_partners',partners);nr.setProperty('Duplicate_status',partners?'suspect':'pending_recheck');rm.setRoi(nr,idx);return partners;})()";
    return "" + eval("js", js);
}

function countDuplicateSuspectsFast() {
    if (nImages() <= 0) return 0;
    js = "(function(){var RM=Packages.ij.plugin.frame.RoiManager,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),count=0;function typ(r){var t=r.getProperty('Type');if(t==null||String(t)=='')t=r.getProperty('Object_type');return t==null?'':String(t);}for(var i=0;i<rois.length;i++){if(typ(rois[i])!='cavity')continue;var s=rois[i].getProperty('Duplicate_status');if(s!=null&&String(s)=='suspect')count++;}return String(count);})();";
    result = "" + eval("js", js);
    value = parseFloat(result);
    if (isNaN(value)) return 0;
    return round(value);
}

function propString(key, defaultValue) {
    s = Roi.getProperty(key);
    if (s == "") return defaultValue;
    return s;
}

function propNumber(key, defaultValue) {
    s = Roi.getProperty(key);
    if (s == "") return defaultValue;
    v = parseFloat(s);
    if (isNaN(v)) return defaultValue;
    return v;
}

function cavityIdCurrent() {
    id = Roi.getProperty("Cavity_id");
    if (id == "") id = Roi.getName;
    return id;
}

function objectIdCurrent(type) {
    currentName = Roi.getName;
    objectId = "";
    if (type == "cavity") {
        objectId = cavityIdCurrent();
        return objectId;
    }
    if (type == "panel") {
        objectId = propString("Panel_id", currentName);
        return objectId;
    }
    if (type == "analysis_mask") {
        objectId = propString("Mask_id", currentName);
        return objectId;
    }
    if (type == "exclusion") {
        objectId = propString("Exclusion_id", currentName);
        return objectId;
    }
    if (isLinearFeatureType(type)) {
        objectId = propString("Feature_id", currentName);
        return objectId;
    }
    if (type == "dislocation_loop") {
        objectId = propString("Object_id", propString("Feature_id", currentName));
        return objectId;
    }
    objectId = currentName;
    return objectId;
}

function findObjectById(id) {
    n = roiManager("count");
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        type = currentRoiType();
        currentId = objectIdCurrent(type);
        currentName = Roi.getName;
        if (currentId == id || currentName == id) return i;
    }
    return -1;
}

function appendToken(list, token) {
    if (token == "") return list;
    if (list == "") return token;
    parts = split(list, ";");
    for (ii=0; ii<parts.length; ii++) if (parts[ii] == token) return list;
    return list + ";" + token;
}

function serialFromId(id) {
    if (id == "") return 0;
    p = lastIndexOf(id, "_");
    if (p < 0 || p >= lengthOf(id)-1) return 0;
    v = parseFloat(substring(id, p+1));
    if (isNaN(v)) return 0;
    return round(v);
}

function featureTypeLabel(featureType) {
    if (featureType == "grain_boundary") return "borde de grano";
    if (featureType == "dislocation") return "dislocacion";
    if (featureType == "interface") return "interfaz";
    return featureType;
}

function min2(a, b) { if (a <= b) return a; return b; }

function safeRoiSelect(idx) {
    // Prevents Fiji RoiManager crashes when an invalid/NaN index reaches roiManager("select", ...).
    if (isNaN(idx)) {
        showStatus("ROI index invalido (NaN). Operacion omitida para evitar error de Fiji.");
        return 0;
    }
    idx = round(idx);
    // In some ImageJ builds round(NaN) may arrive here as Integer.MIN_VALUE.
    if (idx <= -2147480000) {
        showStatus("ROI index invalido (-2147483648). Operacion omitida para evitar error de Fiji.");
        return 0;
    }
    count = roiManager("count");
    if (idx < 0 || idx >= count) {
        showStatus("ROI index fuera de rango: " + idx + " / " + count + ". Operacion omitida.");
        return 0;
    }
    roiManager("select", idx);
    return 1;
}

function max2(a, b) { if (a >= b) return a; return b; }

function axialAngleDifferenceDeg(a, b) {
    if (isNaN(a) || isNaN(b)) return NaN;
    d = abs(a-b);
    while (d >= 180) d = d-180;
    if (d > 90) d = 180-d;
    return abs(d);
}

function percentileSorted(arr, percent) {
    n = arr.length;
    if (n == 0) return NaN;
    if (n == 1) return arr[0];
    p = percent;
    if (p < 0) p = 0;
    if (p > 100) p = 100;
    pos = (p/100.0)*(n-1);
    lo = floor(pos);
    hi = ceil(pos);
    if (lo == hi) return arr[lo];
    f = pos-lo;
    return arr[lo]*(1-f)+arr[hi]*f;
}

function resetNamedTable(name) { Table.create(name); }

function sanitizeId(s, fallback) {
    s = String.trim(s);
    s = sanitize(s);
    out = "";
    allowed = "ABCDEFGHIJKLMNOPQRSTUVWXYZabcdefghijklmnopqrstuvwxyz0123456789_-";
    for (kk=0; kk<lengthOf(s); kk++) {
        ch = substring(s, kk, kk+1);
        if (indexOf(allowed, ch) >= 0) out = out+ch;
        else out = out+"_";
    }
    while (indexOf(out, "__") >= 0) out = replace(out, "__", "_");
    if (out == "") out = fallback;
    return out;
}

function sanitize(s) {
    s = String.trim(s);
    out = "";
    for (kk=0; kk<lengthOf(s); kk++) {
        ch = substring(s, kk, kk+1);
        if (ch == " " || ch == "\t" || ch == "\r" || ch == "\n") out = out+"_";
        else if (ch == ":" || ch == ";" || ch == "/" || ch == "\\") out = out+"-";
        else out = out+ch;
    }
    return out;
}

function sanitizeFileName(s) {
    s = sanitize(s);
    forbidden = ".\"<>|?*";
    out = "";
    for (kk=0; kk<lengthOf(s); kk++) {
        ch = substring(s, kk, kk+1);
        if (indexOf(forbidden, ch) >= 0) out = out+"-";
        else out = out+ch;
    }
    while (indexOf(out, "--") >= 0) out = replace(out, "--", "-");
    while (indexOf(out, "__") >= 0) out = replace(out, "__", "_");
    if (out == "") out = "CavityProject";
    return out;
}

function stripExtension(s) {
    p = lastIndexOf(s, ".");
    if (p <= 0) return "" + s;
    out = substring(s, 0, p);
    return "" + out;
}


function projectBaseName() {
    if (lightImageId != "") return lightImageId;
    baseTitle = stripExtension(getTitle());
    safeBaseTitle = lightSanitizeId(baseTitle);
    return safeBaseTitle;
}

function normalizeStoredPath(pathText) {
    // Use fromCharCode(92) instead of a literal backslash. Some ImageJ/Fiji macro
    // parses and some copy/paste routes can corrupt replace(pathText, "\\", "/").
    pathText = "" + pathText;
    slashChar = fromCharCode(92);
    normalizedPath = replace(pathText, slashChar, "/");
    return "" + normalizedPath;
}

function looksLikeCollapsedWindowsPath(pathText) {
    if (lengthOf(pathText) < 3) return 0;
    if (substring(pathText, 1, 2) != ":") return 0;
    tailPath = substring(pathText, 2, lengthOf(pathText));
    if (indexOf(tailPath, "/") >= 0 || indexOf(tailPath, "\\") >= 0) return 0;
    return 1;
}

function chooseDirectorySafe(title) {
    safeChooserTitle = jsEscape(title);
    chooserCode = "var D=Packages.ij.io.DirectoryChooser;var d=new D('" + safeChooserTitle + "');var p=d.getDirectory();p==null?'':String(p);";
    chosenDirectory = eval("js", chooserCode);
    if (chosenDirectory == "null") chosenDirectory = "";
    return chosenDirectory;
}

function chooseFileSafe(title) {
    safeChooserTitle = jsEscape(title);
    chooserCode = "var JFileChooser=Packages.javax.swing.JFileChooser;var OpenDialog=Packages.ij.io.OpenDialog;var File=Packages.java.io.File;var fc=new JFileChooser();fc.setDialogTitle('" + safeChooserTitle + "');fc.setFileSelectionMode(JFileChooser.FILES_ONLY);var d=OpenDialog.getDefaultDirectory();if(d!=null)fc.setCurrentDirectory(new File(String(d)));var r=fc.showOpenDialog(Packages.ij.IJ.getInstance());var p='';if(r==JFileChooser.APPROVE_OPTION&&fc.getSelectedFile()!=null)p=String(fc.getSelectedFile().getAbsolutePath());p;";
    chosenFile = eval("js", chooserCode);
    if (chosenFile == "null") chosenFile = "";
    return chosenFile;
}

function repairCommonTextEncoding(s) {
    // Repairs the most common UTF-8-as-Latin-1 sequences seen after loading
    // ROI properties, without requiring non-ASCII source-code literals.
    s = replace(s, fromCharCode(194)+fromCharCode(176), fromCharCode(176));
    s = replace(s, fromCharCode(194)+fromCharCode(181), fromCharCode(181));
    s = replace(s, fromCharCode(194)+fromCharCode(186), fromCharCode(186));
    s = replace(s, fromCharCode(195)+fromCharCode(161), fromCharCode(225));
    s = replace(s, fromCharCode(195)+fromCharCode(169), fromCharCode(233));
    s = replace(s, fromCharCode(195)+fromCharCode(173), fromCharCode(237));
    s = replace(s, fromCharCode(195)+fromCharCode(179), fromCharCode(243));
    s = replace(s, fromCharCode(195)+fromCharCode(186), fromCharCode(250));
    s = replace(s, fromCharCode(195)+fromCharCode(177), fromCharCode(241));
    return s;
}

function jsEscape(s) {
    out = "";
    for (jj=0; jj<lengthOf(s); jj++) {
        ch = substring(s, jj, jj+1);
        if (ch == "\\") out = out + "\\\\";
        else if (ch == "'") out = out + "\\'";
        else if (ch == "\n") out = out + "\\n";
        else if (ch == "\r") out = out + "\\r";
        else if (ch == "\t") out = out + "\\t";
        else out = out + ch;
    }
    return out;
}

function jsonEscape(s) {
    out = "";
    for (jj=0; jj<lengthOf(s); jj++) {
        ch = substring(s, jj, jj+1);
        if (ch == "\\") out = out + "\\\\";
        else if (ch == "\"") out = out + "\\\"";
        else if (ch == "\n") out = out + "\\n";
        else if (ch == "\r") out = out + "\\r";
        else if (ch == "\t") out = out + "\\t";
        else out = out + ch;
    }
    return out;
}

function jsonNumber(v) {
    if (isNaN(v)) return "null";
    return ""+v;
}

function projectJson() {
    updateScaleMaybe();
    countsOk = lightRefreshObjectCounts();
    s = "{\n";
    s = s + "  \"format\": \"Cavity TEM Light image session\",\n";
    s = s + "  \"schema_version\": \"" + lightSchemaVersion + "\",\n";
    s = s + "  \"tool_version\": \"" + jsonEscape(macroVersion) + "\",\n";
    s = s + "  \"validation_state\": \"" + lightValidationState + "\",\n";
    s = s + "  \"project\": {\"id\": \"" + jsonEscape(lightProjectId) + "\", \"uid\": \"" + jsonEscape(lightProjectUid) + "\", \"name\": \"" + jsonEscape(lightProjectName) + "\", \"root\": \"" + jsonEscape(lightProjectRoot) + "\"},\n";
    s = s + "  \"image\": {\"id\": \"" + jsonEscape(lightImageId) + "\", \"title\": \"" + jsonEscape(getTitle()) + "\", \"source_path\": \"" + jsonEscape(lightSourcePath) + "\", \"stored_path\": \"" + jsonEscape(lightSourceStoredPath) + "\", \"sha256\": \"" + jsonEscape(lightSourceSha256) + "\", \"width_px\": " + getWidth() + ", \"height_px\": " + getHeight() + "},\n";
    s = s + "  \"scientific_context\": {\"sample\": \"" + jsonEscape(sampleName) + "\", \"condition\": \"" + jsonEscape(experimentalCondition) + "\", \"operator\": \"" + jsonEscape(operatorName) + "\"},\n";
    s = s + "  \"analysis_mode\": \"" + lightImageMode + "\",\n";
    s = s + "  \"scale\": {\"confirmed\": " + lightScaleConfirmed + ", \"origin\": \"" + jsonEscape(lightScaleOrigin) + "\", \"original_nm_per_px_x\": " + jsonNumber(lightOriginalScaleNmX) + ", \"original_nm_per_px_y\": " + jsonNumber(lightOriginalScaleNmY) + ", \"active_nm_per_px_x\": " + jsonNumber(nmPerPixelX) + ", \"active_nm_per_px_y\": " + jsonNumber(nmPerPixelY) + "},\n";
    s = s + "  \"thickness\": {\"nm\": " + jsonNumber(lightThicknessNm) + ", \"uncertainty_nm\": " + jsonNumber(lightThicknessUncertaintyNm) + ", \"method\": \"" + jsonEscape(lightThicknessMethod) + "\", \"notes\": \"" + jsonEscape(lightThicknessNotes) + "\"},\n";
    s = s + "  \"surface\": {\"defined\": " + surfaceDefined + ", \"side_defined\": " + surfaceSideDefined + "},\n";
    s = s + "  \"bands\": {\"width_nm\": " + jsonNumber(bandNm) + ", \"count\": " + bandCount + "},\n";
    s = s + "  \"settings\": {\"include_uncertain\": " + lightIncludeUncertain + ", \"histogram_bin_nm\": " + jsonNumber(lightHistogramBinNm) + ", \"feature_distance_bin_nm\": " + jsonNumber(lightFeatureDistanceBinNm) + ", \"interactive_preview\": " + lightInteractivePreviewEnabled + ", \"resize_step_nm\": " + jsonNumber(lightInteractiveResizeStepNm) + ", \"exact_labels_visible\": " + showRoiLabels + ", \"exact_label_mode\": \"roi_name_v1\"},\n";
    s = s + "  \"identity_audit\": {\"errors\": " + lightLastIdAuditErrors + ", \"duplicate_ids\": " + lightLastIdAuditDuplicateIds + "},\n";
    s = s + "  \"performance\": {\"prepared_state_reused\": " + lightLastPreparationReused + ", \"prepared_state_duration_ms\": " + jsonNumber(lightLastPreparationDurationMs) + ", \"area_mode\": \"" + jsonEscape(lightAreaComputationMode) + "\", \"area_duration_ms\": " + jsonNumber(lightAreaComputationDurationMs) + "},\n";
    s = s + "  \"area\": {\"whole_image_confirmed\": " + lightUseWholeImage + ", \"valid_area_nm2\": " + jsonNumber(lastValidAreaNm2) + "},\n";
    s = s + "  \"revision_id\": \"" + jsonEscape(lightCurrentRevision) + "\",\n";
    s = s + "  \"objects\": {\"cavities\": " + lightObjectCountCavities + ", \"analysis_masks\": " + lightObjectCountMasks + ", \"exclusions\": " + lightObjectCountExclusions + ", \"grain_boundaries\": " + lightObjectCountGrainBoundaries + ", \"dislocations\": " + lightObjectCountDislocations + ", \"interfaces\": " + lightObjectCountInterfaces + "}\n";
    s = s + "}\n";
    return s;
}


function exportReadmeText(foilNm, areaOk) {
    txt = "CAVITY ROI TOOLSET v8 - NOTAS DE EXPORTACION\n";
    txt = txt + "============================================\n\n";
    txt = txt + "Muestra: " + sampleName + "\nMontaje: " + montageId + "\n";
    if (sourceImageList != "") txt = txt + "Fuentes explicitas: " + sourceImageList + "\n";
    else txt = txt + "Rango de origen informativo: " + sourceFirst + " - " + sourceLast + "\n";
    txt = txt + "Imagen: " + getTitle() + "\nEscala: " + d2s(nmPerPixelX, 10) + " nm/px (x), " + d2s(nmPerPixelY, 10) + " nm/px (y)\n";
    txt = txt + "Bandas: " + bandCount + " x " + d2s(bandNm, 6) + " nm\n";
    txt = txt + "Espesor de foil introducido: " + d2s(foilNm, 6) + " nm\n\n";
    txt = txt + "El centro, diametro equivalente, ejes, area, profundidad, posicion sobre la superficie, panel y estados de validacion se recalcularon desde la geometria actual de las ROIs antes de exportar.\n";
    if (areaOk) txt = txt + "Las areas por banda se estimaron mediante muestreo geometrico con paso " + d2s(lastAreaSamplingStepPx, 0) + " px. Cada celda se incluyo solo si pertenecia a la mascara/panel valido, no estaba en una exclusion y su profundidad firmada estaba dentro de la banda.\n";
    else txt = txt + "No se pudo calcular el area por bandas. Las densidades y fracciones dependientes del area pueden aparecer como NaN.\n";
    if (v51LastExactAreaMethod != "not_calculated") txt = txt + "El area total y por panel se calculo exactamente desde ownership>0, inclusion opcional y union de exclusiones: " + v51LastExactAreaCsv + "\n";
    txt = txt + "La densidad volumetrica usa volumen de muestra = area valida de banda x espesor de foil. El volumen de cavidad se estima como esfera de diametro equivalente: V=pi*d^3/6.\n";
    txt = txt + "Los duplicados son advertencias y no se excluyen automaticamente. Las cavidades de borde se conservan y se identifican mediante edge_intersecting.\n";
    txt = txt + "Para analisis estadistico jerarquico conserva panel_id/source_filename y agrega primero por campo, imagen y muestra.\n";
    return txt;
}



// -----------------------------------------------------------------------------
// Fiji launcher for Cavity TEM Studio GUI
// -----------------------------------------------------------------------------

function openCavityManagerFromFiji() {
    batPath = readCavityManagerBatPath();
    if (batPath == "" || !File.exists(batPath)) {
        if (batPath != "" && !File.exists(batPath)) showMessage("Ruta no encontrada", "No encuentro el launcher guardado:\n" + batPath + "\n\nSelecciona de nuevo Run_Cavity_TEM_Studio_v5_6_0.bat.");
        batPath = askForCavityManagerBatPath();
        if (batPath == "") return;
        saveCavityManagerBatPath(batPath);
    }
    launchCavityManagerBat(batPath);
}

function configureCavityManagerLauncher() {
    batPath = askForCavityManagerBatPath();
    if (batPath == "") return;
    saveCavityManagerBatPath(batPath);
    showMessage("Cavity TEM Studio configurado", "Launcher guardado:\n" + batPath + "\n\nYa puedes abrir Studio desde el panel de Fiji.");
}

function askForCavityManagerBatPath() {
    path = File.openDialog("Selecciona Run_Cavity_TEM_Studio_v5_6_0.bat");
    if (path == "") return "";
    path = "" + normalizeStoredPath(path);
    if (!endsWith(toLowerCase(path), ".bat")) {
        showMessage("Archivo no valido", "Selecciona el archivo versionado que lanza Cavity TEM Studio.\n\nArchivo:\nRun_Cavity_TEM_Studio_v5_6_0.bat");
        return "";
    }
    return "" + path;
}

function cavityManagerPrefsPath() {
    return getDirectory("macros") + "Cavity_Manager_Launcher_Path.txt";
}

function readCavityManagerBatPath() {
    pathFile = cavityManagerPrefsPath();
    if (!File.exists(pathFile)) return "";
    txt = File.openAsString(pathFile);
    lines = split(txt, "\n");
    if (lines.length <= 0) return "";
    path = String.trim(replace(lines[0], "\r", ""));
    path = "" + normalizeStoredPath(path);
    return "" + path;
}

function saveCavityManagerBatPath(path) {
    path = "" + normalizeStoredPath(path);
    File.saveString(path + "\n", cavityManagerPrefsPath());
}

function launchCavityManagerBat(path) {
    path = "" + normalizeStoredPath(path);
    safePath = jsEscape(path);
    parentDir = File.getParent(path);
    if (parentDir == "") parentDir = getDirectory("home");
    safeParent = jsEscape(parentDir);
    js = "var PB=Packages.java.lang.ProcessBuilder;var File=Packages.java.io.File;";
    js = js + "var pb=new PB('cmd.exe','/c','start','', '" + safePath + "');";
    js = js + "pb.directory(new File('" + safeParent + "'));";
    js = js + "pb.start();'1';";
    out = eval("js", js);
    if (out == "1") showStatus("Cavity TEM Studio lanzado: " + path);
}

// -----------------------------------------------------------------------------
// ProjectAware integration with Cavity TEM Studio projects
// -----------------------------------------------------------------------------

function projectAwareOpenPreparedProject() {
    projectDir = chooseDirectorySafe("Elige carpeta raiz del proyecto Cavity preparado");
    if (projectDir == "") {
        showStatus("Apertura de proyecto preparada cancelada.");
        return;
    }
    if (!projectAwareLoadProject(projectDir)) return;
    projectAwareApplyToCoreMetadata();

    roiPath = projectAwareDefaultSessionRoiPath();
    roisFound = File.exists(roiPath);
    panelsFound = countTypeFast("panel") > 0;
    buildLogFound = File.exists(projectAwareMontageBuildLogCsv);

    createLegacyPanelsDefault = 0;
    if (buildLogFound) {
        if (!panelsFound) createLegacyPanelsDefault = 1;
    }

    Dialog.create("Abrir proyecto Cavity preparado");
    Dialog.addMessage(projectAwareSummary());
    Dialog.addChoice("Imagen para abrir", newArray("Master original montage", "Choose processed analysis image...", "Do not open image"), "Master original montage");
    Dialog.addCheckbox("Aplicar escala desde metadatos", 1);
    Dialog.addCheckbox("Inicializar/actualizar sessions/cavity_results.csv", 1);
    Dialog.addCheckbox("Cargar la sesion current publicada si existe", roisFound);
    Dialog.addCheckbox("Crear paneles TEM desde montage_build_log.csv", createLegacyPanelsDefault);
    Dialog.show();

    imageChoice = Dialog.getChoice();
    setScaleFromMetadata = Dialog.getCheckbox();
    initResults = Dialog.getCheckbox();
    loadProjectRois = Dialog.getCheckbox();
    createPanels = Dialog.getCheckbox();

    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "preparar el proyecto historico", 1)) return;
    if (initResults) projectAwareEnsureResultsCsv();

    if (imageChoice == "Master original montage") {
        projectAwareOpenImage(projectAwareMasterTif, "master_original");
    } else if (imageChoice == "Choose processed analysis image...") {
        analysisPath = projectAwareChooseFileInDirectory("Elige imagen procesada de analisis", projectAwareAnalysisDir());
        if (analysisPath == "") {
            showStatus("No se selecciono imagen de analisis.");
        } else {
            projectAwareOpenImage(analysisPath, "processed_analysis_image");
        }
    }

    if (nImages() > 0 && setScaleFromMetadata) projectAwareApplyScaleFromMetadata();
    if (nImages() > 0) projectAwareAttachProjectInfoToImage();

    if (loadProjectRois && roisFound) projectAwareLoadRoisFromProject();
    if (createPanels) projectAwareCreatePanelRoisFromBuildLog(0);

    projectAwareWriteActiveProjectMarker();
    updateSessionMetadataRoi();
    showControlPanel();
    projectAwareAutoOpenBrightnessContrast();
    refreshControlPanelStatus();
    showStatus("Proyecto preparado cargado: " + projectAwareProjectDir);
}

function projectAwareReloadMetadataForCurrentImage() {
    if (projectAwareProjectDir == "") {
        projectDir = chooseDirectorySafe("Elige carpeta raiz del proyecto Cavity preparado");
        if (projectDir == "") return;
    } else projectDir = projectAwareProjectDir;
    if (!projectAwareLoadProject(projectDir)) return;
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "recargar los metadatos", 1)) return;
    projectAwareApplyToCoreMetadata();
    if (nImages() > 0) {
        projectAwareApplyScaleFromMetadata();
        projectAwareAttachProjectInfoToImage();
        updateSessionMetadataRoi();
    }
    projectAwareWriteActiveProjectMarker();
    refreshControlPanelStatus();
    showMessage("Proyecto recargado", projectAwareSummary());
}

function projectAwareSelectAnalysisImage() {
    if (!projectAwareEnsureLoaded()) return;
    Dialog.create("Seleccionar imagen para medir");
    Dialog.addMessage("Proyecto activo:\n" + projectAwareProjectDir + "\n\nElige la imagen que se usara para medir.");
    Dialog.addChoice("Imagen", newArray("Master original montage", "Choose processed analysis image..."), "Master original montage");
    Dialog.addCheckbox("Aplicar escala desde proyecto", 1);
    Dialog.show();
    choice = Dialog.getChoice();
    setScaleFromMetadata = Dialog.getCheckbox();
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "seleccionar la imagen de analisis", 1)) return;

    if (choice == "Master original montage") {
        projectAwareOpenImage(projectAwareMasterTif, "master_original");
    } else {
        analysisPath = projectAwareChooseFileInDirectory("Elige imagen procesada de analisis", projectAwareAnalysisDir());
        if (analysisPath == "") return;
        projectAwareOpenImage(analysisPath, "processed_analysis_image");
    }
    if (setScaleFromMetadata) projectAwareApplyScaleFromMetadata();
    projectAwareAttachProjectInfoToImage();
    updateSessionMetadataRoi();
    projectAwareWriteActiveProjectMarker();
    showControlPanel();
    projectAwareAutoOpenBrightnessContrast();
    refreshControlPanelStatus();
}

function projectAwareAutoOpenBrightnessContrast() {
    if (autoOpenBrightnessContrast && nImages() > 0) run("Brightness/Contrast...");
}

function projectAwareShowCurrentInfo() {
    if (!projectAwareEnsureLoaded()) return;
    showMessage("Proyecto Cavity activo", projectAwareSummary());
}

function projectAwareEnsureLoaded() {
    if (projectAwareActive && projectAwareProjectDir != "") {
        if (!v55RequireActiveImageProjectContext(projectAwareProjectDir, "usar el proyecto cargado", 1)) {
            projectAwareActive = 0;
            return 0;
        }
        return 1;
    }
    projectDir = chooseDirectorySafe("Elige carpeta raiz del proyecto Cavity preparado");
    if (projectDir == "") return 0;
    loaded = projectAwareLoadProject(projectDir);
    if (!loaded) return 0;
    return v55RequireActiveImageProjectContext(projectAwareProjectDir, "usar el proyecto cargado", 1);
}

function projectAwareResolveProjectPath(path) {
    path = normalizeStoredPath(path);
    if (path == "") return "";
    // Absolute Windows path, UNC path, or Unix path.
    if (lengthOf(path) >= 2 && substring(path, 1, 2) == ":") return "" + path;
    if (startsWith(path, "//")) return "" + path;
    if (startsWith(path, "/")) return "" + path;
    resolvedPath = projectAwareJoinPath(projectAwareProjectDir, path);
    return "" + resolvedPath;
}

function projectAwareFirstExistingPath(a, b, c, d) {
    p = projectAwareResolveProjectPath(a);
    if (p != "" && File.exists(p)) return "" + p;
    p = projectAwareResolveProjectPath(b);
    if (p != "" && File.exists(p)) return "" + p;
    p = projectAwareResolveProjectPath(c);
    if (p != "" && File.exists(p)) return "" + p;
    p = projectAwareResolveProjectPath(d);
    if (p != "" && File.exists(p)) return "" + p;
    p = projectAwareResolveProjectPath(a);
    return "" + p;
}

function projectAwareApplyScaleToActiveImageCommand() {
    if (!projectAwareEnsureLoaded()) return;
    if (nImages() <= 0) {
        showMessage("Sin imagen", "Abre primero el montaje o la imagen de analisis.");
        return;
    }
    projectAwareApplyScaleFromMetadata();
    projectAwareAttachProjectInfoToImage();
    updateSessionMetadataRoi();
    projectAwareAppendLog("apply_scale_manual", "Applied project scale to active image: " + getTitle());
    showMessage("Escala aplicada", "Escala del proyecto aplicada a la imagen activa.\n\n" + projectAwarePixelWidth + " x " + projectAwarePixelHeight + " " + projectAwarePixelUnit + "/px");
}

function projectAwareLoadProject(projectDir) {
    if (projectDir == "") return 0;
    candidateProjectDir = normalizeStoredPath(projectDir);
    if (endsWith(candidateProjectDir, "/") || endsWith(candidateProjectDir, "\\"))
        candidateProjectDir = substring(candidateProjectDir, 0, lengthOf(candidateProjectDir)-1);
    if (!v55ProjectBridgeMarkerClear(candidateProjectDir, "cargar el proyecto historico", 1)) return 0;
    if (v4ProjectLoaded && v4ProjectDir == candidateProjectDir) return 1;
    if (!v4LoadProject(candidateProjectDir)) {
        projectAwareActive = 0;
        return 0;
    }
    if (!v55ProjectBridgeMarkerClear(candidateProjectDir, "terminar de cargar el proyecto historico", 1)) {
        projectAwareActive = 0;
        v4ProjectLoaded = 0;
        return 0;
    }
    return 1;
}

function projectAwareApplyToCoreMetadata() {
    if (sampleName != "" && montageId != "") projectConfigured = 1;
    if (operatorName == "") operatorName = getInfo("user.name");
    if (sourceImageList == "" && File.exists(projectAwareLayoutCheckCsv))
        sourceImageList = projectAwareBuildSourceImageListFromLayoutCheck();
}

function projectAwareOpenImage(path, role) {
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "abrir una imagen del proyecto", 1)) return;
    if (!v4ProjectLoaded) {
        if (!v4LoadProject(projectAwareProjectDir)) {
            showMessage("Apertura cuantitativa bloqueada", "El flujo ProjectAware historico no puede abrir una imagen de analisis sin current_bridge.json y una revision v5.6.0 verificada.");
            return;
        }
    }
    if (role == "master_original") {
        if (toLowerCase(v55CanonicalPathJava(path)) != toLowerCase(v55CanonicalPathJava(v4MasterImage))) {
            showMessage("Apertura cuantitativa bloqueada", "La ruta solicitada no es el maestro vigente sellado por current_montage.json.");
            return;
        }
        if (!v4OpenOrActivateRegisteredMaster(1)) return;
        return;
    }
    if (path == "") {
        showMessage("Ruta de imagen vacia", "No hay imagen para abrir.");
        return;
    }
    if (!File.exists(path)) {
        showMessage("Imagen no encontrada", "No encuentro:\n" + path);
        return;
    }
    open(path);
    projectAwareCurrentAnalysisImagePath = normalizeStoredPath(path);
    projectAwareCurrentAnalysisImageRole = role;
    projectAwareCurrentAnalysisImageName = File.getName(path);
    refreshImageIdentity();
    if (startsWith(getTitle(), "VIEW_ONLY__")) {
        if (!getBoolean("La imagen activa empieza por VIEW_ONLY__.\n\nEstas copias son solo para inspeccion visual, no para exportacion cuantitativa.\n\nQuieres continuar de todos modos?", "Continuar", "Cancelar")) return;
    }
}

function projectAwareApplyScaleFromMetadata() {
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "aplicar la escala del proyecto", 1)) return;
    if (nImages() <= 0) return;
    pxw = projectAwareParseFloat(projectAwarePixelWidth);
    pxh = projectAwareParseFloat(projectAwarePixelHeight);
    unit = projectAwarePixelUnit;
    if (unit == "") unit = "nm";
    if (pxw <= 0) {
        showMessage("Escala no aplicada", "No hay source_pixel_width valido en los metadatos del proyecto.");
        return;
    }
    if (pxh <= 0) pxh = pxw;
    setVoxelSize(pxw, pxh, 1, unit);
    // Some Fiji/Bio-Formats imports ignore TIFF/ImageJ calibration. Force the active image calibration too.
    run("Set Scale...", "distance=1 known=" + pxw + " unit=[" + unit + "] global");
    updateScaleMaybe();
    projectAwareAppendLog("set_scale", "Set image scale from project: " + projectAwarePixelWidth + " x " + projectAwarePixelHeight + " " + unit + "/px");
}

function projectAwareAttachProjectInfoToImage() {
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "adjuntar el contexto del proyecto", 1)) return;
    if (nImages() <= 0) return;
    txt = "Cavity ProjectAware context\n";
    txt = txt + "macro_version=" + macroVersion + "\n";
    txt = txt + "project_dir=" + projectAwareProjectDir + "\n";
    txt = txt + "project_uid=" + projectAwareProjectUid + "\n";
    txt = txt + "sampleName=" + sampleName + "\n";
    txt = txt + "experimentalCondition=" + experimentalCondition + "\n";
    txt = txt + "montageId=" + montageId + "\n";
    txt = txt + "sourceFirst=" + sourceFirst + "\n";
    txt = txt + "sourceLast=" + sourceLast + "\n";
    txt = txt + "sourceEndExclusive=" + projectAwareSourceEndExclusive + "\n";
    txt = txt + "panel_count=" + projectAwarePanelCount + "\n";
    txt = txt + "source_pixel_width=" + projectAwarePixelWidth + "\n";
    txt = txt + "source_pixel_height=" + projectAwarePixelHeight + "\n";
    txt = txt + "source_pixel_unit=" + projectAwarePixelUnit + "\n";
    txt = txt + "analysis_image_path=" + projectAwareCurrentAnalysisImagePath + "\n";
    txt = txt + "analysis_image_role=" + projectAwareCurrentAnalysisImageRole + "\n";
    setMetadata("Info", txt);
}

function projectAwareSaveSessionToProject() {
    if (!projectAwareEnsureLoaded()) return 0;
    return v56PrepareRoiSessionRequest("ProjectAware save session");
}

function projectAwareLoadRoisFromProject() {
    if (!projectAwareEnsureLoaded()) return 0;
    return v4LoadSession();
}

function projectAwareCreatePanelRoisFromBuildLog(force) {
    if (!projectAwareEnsureLoaded()) return;
    if (!v4EnsureProject()) return;
    v4CreatePanelsFromManifest();
    return;
    if (nImages() <= 0) {
        showMessage("Sin imagen", "Abre primero el master montage para crear los paneles.");
        return;
    }
    if (!File.exists(projectAwareMontageBuildLogCsv)) {
        showMessage("Build log no encontrado", "No encuentro:\n" + projectAwareMontageBuildLogCsv + "\n\nVuelve a preparar el proyecto con el script Python para generar montage_build_log.csv.");
        return;
    }
    existingPanels = countTypeFast("panel");
    if (existingPanels > 0 && !force) {
        if (!getBoolean("Ya existen " + existingPanels + " paneles TEM.\n\nQuieres crear paneles nuevos desde el layout de todos modos?", "Crear de todos modos", "Cancelar")) return;
    }

    text = File.openAsString(projectAwareMontageBuildLogCsv);
    lines = split(text, "\n");
    if (lines.length < 2) {
        showMessage("Build log vacio", "El CSV no contiene filas de panel.");
        return;
    }
    header = split(replace(lines[0], "\r", ""), ",");
    ixX = projectAwareColumnIndex(header, "x_canvas_px");
    ixY = projectAwareColumnIndex(header, "y_canvas_px");
    ixW = projectAwareColumnIndex(header, "paste_width_px");
    ixH = projectAwareColumnIndex(header, "paste_height_px");
    ixSrc = projectAwareColumnIndex(header, "source_relative_path");
    ixPanel = projectAwareColumnIndex(header, "panel_idx");
    if (ixX < 0 || ixY < 0 || ixW < 0 || ixH < 0) {
        showMessage("Columnas no reconocidas", "El build log no contiene x_canvas_px/y_canvas_px/paste_width_px/paste_height_px.");
        return;
    }

    run("ROI Manager...");
    created = 0;
    for (li=1; li<lines.length; li++) {
        line = replace(lines[li], "\r", "");
        if (line == "") continue;
        vals = split(line, ",");
        if (vals.length <= ixH) continue;
        x = projectAwareParseFloat(projectAwareCsvCell(vals, ixX));
        y = projectAwareParseFloat(projectAwareCsvCell(vals, ixY));
        w = projectAwareParseFloat(projectAwareCsvCell(vals, ixW));
        h = projectAwareParseFloat(projectAwareCsvCell(vals, ixH));
        if (w <= 0 || h <= 0) continue;
        panelIdx = created;
        if (ixPanel >= 0 && vals.length > ixPanel) panelIdx = round(projectAwareParseFloat(projectAwareCsvCell(vals, ixPanel)));
        source = "";
        if (ixSrc >= 0 && vals.length > ixSrc) source = projectAwareCsvCell(vals, ixSrc);
        serial = panelCounter + 1;
        id = "PANEL_" + IJ.pad(serial, 3);
        makeRectangle(x, y, w, h);
        Roi.setName(id);
        Roi.setGroup(0);
        Roi.setFillColor("#00000000");
        Roi.setStrokeColor("white");
        Roi.setUnscalableStrokeWidth(2);
        setCommonObjectProperties();
        v4StampCurrentRevisionBinding();
        Roi.setProperty("Type", "panel");
        Roi.setProperty("Panel_id", id);
        Roi.setProperty("Panel_order", d2s(serial, 0));
        Roi.setProperty("Panel_idx_from_layout", d2s(panelIdx, 0));
        Roi.setProperty("Source_filename", source);
        Roi.setProperty("Notes", "Created automatically from montage_build_log.csv");
        roiManager("add");
        idx = roiManager("count")-1;
        syncAreaObjectAtIndex(idx);
        panelCounter = serial;
        created++;
    }
    updateSessionMetadataRoi();
    restyleAllRois();
    showAllRois();
    projectAwareAppendLog("create_panels", "Created " + created + " panel ROIs from build log");
    refreshControlPanelStatus();
    showStatus("Paneles creados desde layout: " + created);
}

function projectAwareEnsureResultsCsv() {
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "inicializar los resultados historicos", 1)) return;
    if (projectAwareResultsCsv == "") projectAwareResultsCsv = projectAwareJoinPath(projectAwareSessionsDir, "cavity_results.csv");
    makeDirIfMissing(projectAwareSessionsDir);
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "inicializar los resultados historicos", 1)) return;
    if (!File.exists(projectAwareResultsCsv)) {
        header = projectAwareResultsHeader();
        File.saveString(header, projectAwareResultsCsv);
    }
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar de inicializar los resultados", 1)) return;
}

function projectAwareWriteSimplifiedResultsCsv() {
    if (!projectAwareEnsureLoaded()) return;
    if (projectAwareResultsCsv == "") projectAwareResultsCsv = projectAwareJoinPath(projectAwareSessionsDir, "cavity_results.csv");
    text = projectAwareResultsHeader();
    n = roiManager("count");
    for (ri=0; ri<n; ri++) {
        safeRoiSelect(ri);
        if (!currentRoiIsCavity()) continue;
        id = cavityIdCurrent();
        xpx = propNumber("Center_x_px", NaN);
        ypx = propNumber("Center_y_px", NaN);
        xnm = propNumber("Center_x_nm", NaN);
        ynm = propNumber("Center_y_nm", NaN);
        dnm = propNumber("Equivalent_diameter_nm", propNumber("Diameter_nm", NaN));
        dpx = NaN;
        if (nmPerPixelX > 0) dpx = dnm/nmPerPixelX;
        depthSigned = propNumber("Signed_depth_nm", NaN);
        depthAbs = propNumber("Depth_absolute_nm", abs(depthSigned));
        band = round(propNumber("Band_index", -1));
        source = propString("Source_filename", "");
        panel = propString("Panel_id", "");
        panelIdx = propString("Panel_idx_from_layout", "");
        includeStats = round(propNumber("Include_in_statistics", 1));
        inside = round(propNumber("Inside_analysis_mask", 1));
        edge = round(propNumber("Edge_intersecting", 0));
        manual = round(propNumber("Manual_excluded", 0));
        duplicate = propString("Duplicate_status", "clear");
        reason = propString("Exclusion_reason", "");
        method = propString("Measurement_source", "");
        cclass = propString("Cavity_class", "confirmed");
        cconf = propString("Cavity_confidence", "high");
        text = text + projectAwareCsvEscape(id) + ",";
        text = text + projectAwareCsvEscape(sampleName) + "," + projectAwareCsvEscape(experimentalCondition) + "," + projectAwareCsvEscape(montageId) + "," + projectAwareCsvEscape(projectAwareProjectUid) + ",";
        text = text + projectAwareCsvEscape(projectAwareCurrentAnalysisImageName) + "," + projectAwareCsvEscape(projectAwareCurrentAnalysisImageRole) + ",";
        text = text + projectAwareCsvEscape(source) + "," + projectAwareCsvEscape(panel) + "," + projectAwareCsvEscape(panelIdx) + ",";
        text = text + d2s(xpx, 6) + "," + d2s(ypx, 6) + "," + d2s(xnm, 6) + "," + d2s(ynm, 6) + ",";
        text = text + d2s(dpx, 6) + "," + d2s(dnm, 6) + "," + d2s(depthAbs, 6) + "," + d2s(depthSigned, 6) + "," + band + ",";
        text = text + includeStats + "," + inside + "," + edge + "," + manual + "," + projectAwareCsvEscape(duplicate) + "," + projectAwareCsvEscape(reason) + "," + projectAwareCsvEscape(method) + "," + projectAwareCsvEscape(cclass) + "," + projectAwareCsvEscape(cconf) + "," + projectAwareCsvEscape(macroVersion) + "\n";
    }
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "publicar los resultados simplificados", 1)) return;
    File.saveString(text, projectAwareResultsCsv);
    latest = projectAwareJoinPath(projectAwareSessionsDir, "cavity_results_latest.csv");
    File.saveString(text, latest);
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar de publicar los resultados", 1)) return;
    projectAwareAppendLog("write_results_csv", "Updated simplified results CSV: " + projectAwareResultsCsv);
}

function projectAwareResultsHeader() {
    return "cavity_id,sample_name,experimental_condition,montage_id,project_uid,analysis_image_name,analysis_image_role,source_file,panel_id,panel_idx,x_global_px,y_global_px,x_global_nm,y_global_nm,diameter_px,diameter_nm,distance_to_surface_nm,signed_depth_nm,band_id,include_in_statistics,inside_analysis_mask,edge_intersecting,manual_excluded,duplicate_status,exclusion_reason,measurement_method,cavity_class,cavity_confidence,tool_version\n";
}


function projectAwareDuplicateFullImage(title) {
    if (nImages() <= 0) {
        showMessage("Sin imagen", "Abra o active una imagen antes de crear una copia completa.");
        return 0;
    }
    sourceImageId = getImageID();
    getDimensions(sourceFullWidth, sourceFullHeight, sourceFullChannels, sourceFullSlices, sourceFullFrames);
    if (sourceFullWidth < 2 || sourceFullHeight < 2) {
        showMessage("Imagen no valida",
            "La imagen activa mide " + sourceFullWidth + " x " + sourceFullHeight + " px y no puede duplicarse como imagen completa.");
        return 0;
    }

    duplicateScript = "var WM=Packages.ij.WindowManager;";
    duplicateScript = duplicateScript + "var imp=WM.getCurrentImage();";
    duplicateScript = duplicateScript + "if(imp==null) throw 'No active image';";
    duplicateScript = duplicateScript + "var roi=imp.getRoi();";
    duplicateScript = duplicateScript + "imp.deleteRoi();";
    duplicateScript = duplicateScript + "var dup=null;";
    duplicateScript = duplicateScript + "try{dup=imp.duplicate();}finally{if(roi!=null)imp.setRoi(roi);}";
    duplicateScript = duplicateScript + "dup.deleteRoi();";
    duplicateScript = duplicateScript + "dup.setTitle('" + jsEscape(title) + "');";
    duplicateScript = duplicateScript + "dup.show();";
    duplicateScript = duplicateScript + "String(dup.getID());";
    duplicateIdText = eval("script", duplicateScript);
    duplicateImageId = parseInt(duplicateIdText);
    if (isNaN(duplicateImageId)) {
        selectImage(sourceImageId);
        showMessage("No se pudo duplicar", "Fiji no devolvio un identificador valido para la copia completa.");
        return 0;
    }

    selectImage(duplicateImageId);
    getDimensions(copyFullWidth, copyFullHeight, copyFullChannels, copyFullSlices, copyFullFrames);
    sameGeometry = copyFullWidth == sourceFullWidth;
    if (copyFullHeight != sourceFullHeight) sameGeometry = 0;
    if (copyFullChannels != sourceFullChannels) sameGeometry = 0;
    if (copyFullSlices != sourceFullSlices) sameGeometry = 0;
    if (copyFullFrames != sourceFullFrames) sameGeometry = 0;
    if (!sameGeometry) {
        close();
        selectImage(sourceImageId);
        showMessage("Copia geometrica rechazada",
            "Origen: " + sourceFullWidth + " x " + sourceFullHeight + " px; C=" + sourceFullChannels + ", Z=" + sourceFullSlices + ", T=" + sourceFullFrames + "\n" +
            "Copia: " + copyFullWidth + " x " + copyFullHeight + " px; C=" + copyFullChannels + ", Z=" + copyFullSlices + ", T=" + copyFullFrames + "\n\n" +
            "La aplicacion ha cerrado la copia para evitar procesar una ROI recortada.");
        return 0;
    }
    run("Select None");
    return 1;
}

function projectAwareCreateFilteredWorkingCopy() {
    if (nImages() <= 0) {
        showMessage("Sin imagen", "Abre primero el montaje maestro o una imagen de analisis.");
        return;
    }
    sourceProjectRoot = v4FindProjectRootFromCurrentImage();
    loadedProjectRoot = "";
    if (v4ProjectLoaded && v4ProjectDir != "") loadedProjectRoot = v4ProjectDir;
    if (!v55RequireProjectRootMatch(sourceProjectRoot, loadedProjectRoot, "crear una copia visual", 1)) return;
    originalTitle = getTitle();
    originalID = getImageID();
    getDimensions(width, height, channels, slices, frames);
    hasRoi = selectionType() != -1;

    Dialog.create("Copia visual / filtrada Cavity");
    Dialog.addMessage("La imagen activa no se modifica.\nLas copias VIEW_ONLY son para inspeccion; las copias de geometria completa pueden registrarse despues como imagen de analisis.");
    Dialog.addChoice("Tipo de copia", newArray("Full image - same geometry", "Current ROI crop - view only"), "Full image - same geometry");
    Dialog.addChoice("Filtro visual", newArray("No pixel filter", "Display contrast only", "Gaussian denoise", "Unsharp visual enhancement", "Bandpass cavity contrast", "CLAHE local contrast"), "Display contrast only");
    Dialog.addNumber("Display saturated pixels (%)", 0.35);
    Dialog.addNumber("Gaussian sigma (px)", 0.8);
    Dialog.addNumber("Unsharp radius (px)", 1.5);
    Dialog.addNumber("Unsharp mask weight", 0.60);
    Dialog.addNumber("Bandpass large structures (px)", 80);
    Dialog.addNumber("Bandpass small structures (px)", 2);
    Dialog.addNumber("CLAHE block size (px)", 127);
    Dialog.addNumber("CLAHE maximum slope", 3.0);
    Dialog.addCheckbox("Guardar esta copia en project/views", projectAwareActive);
    Dialog.show();

    copyType = Dialog.getChoice();
    preset = Dialog.getChoice();
    sat = Dialog.getNumber();
    sigma = Dialog.getNumber();
    unsharpRadius = Dialog.getNumber();
    unsharpWeight = Dialog.getNumber();
    bpLarge = Dialog.getNumber();
    bpSmall = Dialog.getNumber();
    claheBlock = Dialog.getNumber();
    claheMax = Dialog.getNumber();
    saveView = Dialog.getCheckbox();

    selectImage(originalID);
    if (copyType == "Current ROI crop - view only" && !hasRoi) {
        if (!getBoolean("No hay ROI seleccionada.\n\nSe creara una copia completa, que puede consumir RAM. Continuar?", "Continuar", "Cancelar")) return;
        copyType = "Full image - same geometry";
    }
    if (copyType == "Full image - same geometry" && width*height > 80000000) {
        if (!getBoolean("El montaje es grande (" + width + " x " + height + " px).\n\nDuplicarlo puede consumir bastante RAM. Continuar?", "Continuar", "Cancelar")) return;
    }

    role = "VIEW_ONLY";
    if (copyType == "Full image - same geometry") role = "VIEW_FULL_GEOMETRY";
    viewTitle = role + "__" + sanitizeFileName(preset) + "__" + originalTitle;
    if (copyType == "Full image - same geometry") {
        if (!projectAwareDuplicateFullImage(viewTitle)) return;
    } else {
        run("Duplicate...", "title=[" + viewTitle + "]");
        run("Select None");
    }
    projectAwareApplyVisualPreset(preset, sat, sigma, unsharpRadius, unsharpWeight, bpLarge, bpSmall, claheBlock, claheMax);

    if (saveView) {
        if (!projectAwareEnsureLoaded()) return;
        if (!v55RequireProjectRootMatch(sourceProjectRoot, projectAwareProjectDir, "guardar la copia visual", 1)) return;
        if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "guardar la copia visual", 1)) return;
        makeDirIfMissing(projectAwareViewsDir);
        id = d2s(getTime(), 0);
        safeViewTitle = sanitizeFileName(viewTitle);
        viewFileName = safeViewTitle + "__" + id + ".tif";
        outPath = projectAwareJoinPath(projectAwareViewsDir, viewFileName);
        if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "guardar la copia visual", 1)) return;
        saveAs("Tiff", outPath);
        if (!projectAwareWriteViewSidecar(outPath, originalTitle, viewTitle, preset, copyType, "working_view", width, height)) { showMessage("Vista parcial", "La imagen se guardo, pero el sidecar quedo bloqueado por una recuperacion del proyecto. No se registra como vista completa.\n\n" + outPath); return; }
        projectAwareAppendLog("save_view", "Saved view copy to " + outPath);
    }
    selectImage(originalID);
    showStatus("Copia visual creada. La imagen original no se ha modificado.");
}

function projectAwareSaveActiveImageAsAnalysisVersion() {
    if (nImages() <= 0) {
        showMessage("Sin imagen", "Selecciona la imagen procesada que quieres registrar.");
        return;
    }
    activeProjectRoot = v4FindProjectRootFromCurrentImage();
    loadedProjectRoot = "";
    if (v4ProjectLoaded && v4ProjectDir != "") loadedProjectRoot = v4ProjectDir;
    if (!v55RequireProjectRootMatch(activeProjectRoot, loadedProjectRoot, "registrar la imagen de analisis", 1)) return;
    if (!projectAwareEnsureLoaded()) return;
    if (!v55RequireProjectRootMatch(activeProjectRoot, projectAwareProjectDir, "registrar la imagen de analisis", 1)) return;
    activeTitle = getTitle();
    getDimensions(width, height, channels, slices, frames);

    Dialog.create("Registrar imagen de analisis");
    Dialog.addMessage("Guarda la imagen activa como version procesada aceptada para medir.\nNo sustituye al master original.");
    Dialog.addString("Nombre de la version", "original_2", 30);
    Dialog.addString("Notas de procesado", "", 60);
    Dialog.addCheckbox("Confirmo que la geometria no ha cambiado: sin resize, rotacion ni crop", 1);
    Dialog.addCheckbox("Confirmo que no es el original bruto, sino una version procesada", 1);
    Dialog.show();
    label = sanitizeFileName(Dialog.getString());
    notes = Dialog.getString();
    geometryOK = Dialog.getCheckbox();
    userUnderstands = Dialog.getCheckbox();
    if (!geometryOK || !userUnderstands) {
        showMessage("No guardado", "Para registrar una imagen de analisis deben confirmarse geometria preservada y trazabilidad.");
        return;
    }
    if (label == "") label = "analysis_image";

    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "registrar la imagen de analisis", 1)) return;
    analysisDir = projectAwareAnalysisDir();
    makeDirIfMissing(projectAwareDerivedDir);
    makeDirIfMissing(analysisDir);
    outPath = projectAwareJoinPath(analysisDir, label + ".tif");
    if (File.exists(outPath)) {
        if (!getBoolean("El archivo ya existe:\n" + outPath + "\n\nSobrescribir?", "Sobrescribir", "Cancelar")) return;
    }
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "guardar la imagen de analisis", 1)) return;
    saveAs("Tiff", outPath);
    projectAwareCurrentAnalysisImagePath = outPath;
    projectAwareCurrentAnalysisImageRole = "processed_analysis_image";
    projectAwareCurrentAnalysisImageName = File.getName(outPath);
    if (!projectAwareWriteAnalysisSidecar(outPath, activeTitle, label, notes, width, height)) { showMessage("Registro parcial", "El TIFF se guardo, pero su sidecar quedo bloqueado por una recuperacion del proyecto. No se anuncia como version registrada.\n\n" + outPath); return; }
    if (!projectAwareAppendAnalysisRegistry(label, outPath, activeTitle, notes, width, height)) { showMessage("Registro parcial", "El TIFF y su sidecar existen, pero el registro quedo bloqueado por una recuperacion del proyecto. No se anuncia como version registrada.\n\n" + outPath); return; }
    projectAwareAttachProjectInfoToImage();
    updateSessionMetadataRoi();
    projectAwareWriteActiveProjectMarker();
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar de registrar la imagen de analisis", 1)) return;
    showMessage("Imagen de analisis registrada", "Guardada en:\n" + outPath + "\n\nEsta imagen podra seleccionarse desde 'Imagen analisis'.");
}

function projectAwareApplyVisualPreset(preset, sat, sigma, unsharpRadius, unsharpWeight, bpLarge, bpSmall, claheBlock, claheMax) {
    if (preset == "No pixel filter") return;
    if (preset == "Display contrast only") {
        run("Enhance Contrast", "saturated=" + sat);
        return;
    }
    if (preset == "Gaussian denoise") {
        run("Gaussian Blur...", "sigma=" + sigma);
        run("Enhance Contrast", "saturated=" + sat);
        return;
    }
    if (preset == "Unsharp visual enhancement") {
        run("Unsharp Mask...", "radius=" + unsharpRadius + " mask=" + unsharpWeight);
        run("Enhance Contrast", "saturated=" + sat);
        return;
    }
    if (preset == "Bandpass cavity contrast") {
        run("Bandpass Filter...", "filter_large=" + bpLarge + " filter_small=" + bpSmall + " suppress=None tolerance=5 autoscale saturate");
        return;
    }
    if (preset == "CLAHE local contrast") {
        run("Enhance Local Contrast (CLAHE)", "blocksize=" + claheBlock + " histogram=256 maximum=" + claheMax + " mask=*None* fast_(less_accurate)");
        run("Enhance Contrast", "saturated=" + sat);
    }
}

function projectAwareSummary() {
    txt = "Project folder:\n" + projectAwareProjectDir + "\n\n";
    txt = txt + "sampleName: " + sampleName + "\n";
    txt = txt + "experimentalCondition: " + experimentalCondition + "\n";
    txt = txt + "montageId: " + montageId + "\n";
    txt = txt + "project_uid: " + projectAwareProjectUid + "\n";
    txt = txt + "source range: " + sourceFirst + " - " + sourceLast + "";
    if (projectAwareSourceEndExclusive != "") txt = txt + " (end exclusive: " + projectAwareSourceEndExclusive + ")";
    txt = txt + "\n";
    txt = txt + "panel_count: " + projectAwarePanelCount + "\n";
    txt = txt + "pixel size: " + projectAwarePixelWidth + " x " + projectAwarePixelHeight + " " + projectAwarePixelUnit + "/px\n";
    txt = txt + "active image: " + projectAwareCurrentAnalysisImageName + " [" + projectAwareCurrentAnalysisImageRole + "]\n";
    txt = txt + "master TIFF:\n" + projectAwareMasterTif + "\n";
    txt = txt + "results CSV:\n" + projectAwareResultsCsv + "\n";
    return txt;
}

function projectAwareDefaultSessionRoiPath() {
    p = projectAwareJoinPath(projectAwareSessionsDir, "current_roi_session.json");
    return "" + p;
}

function projectAwareDefaultExportDir() {
    d = projectAwareJoinPath(projectAwareSessionsDir, "exports");
    if (!endsWith(d, "/") && !endsWith(d, "\\")) d = d + "/";
    return d;
}

function projectAwareAnalysisDir() {
    p = projectAwareJoinPath(projectAwareDerivedDir, "analysis_images");
    return "" + p;
}

function projectAwareGetField(fieldName) {
    fieldValue = "";
    if (File.exists(projectAwareProjectFieldsCsv)) {
        fieldValue = projectAwareReadFieldFromCsv(projectAwareProjectFieldsCsv, fieldName);
        if (fieldValue != "") return "" + fieldValue;
    }
    if (File.exists(projectAwareMetadataJson)) {
        textJson = File.openAsString(projectAwareMetadataJson);
        fieldValue = projectAwareReadFieldFromJsonText(textJson, fieldName);
        return "" + fieldValue;
    }
    return "";
}

function projectAwareReadFieldFromCsv(path, fieldName) {
    textCsv = File.openAsString(path);
    csvField = projectAwareReadFieldFromCsvText(textCsv, fieldName);
    return "" + csvField;
}

function projectAwareReadFieldFromCsvText(textCsv, fieldName) {
    if (lengthOf(textCsv) > 0 && charCodeAt(textCsv, 0) == 65279) textCsv = substring(textCsv, 1, lengthOf(textCsv));
    bomMojibake = fromCharCode(239) + fromCharCode(187) + fromCharCode(191);
    if (startsWith(textCsv, bomMojibake)) textCsv = substring(textCsv, 3, lengthOf(textCsv));
    lines = split(textCsv, "\n");
    key1 = fieldName + ",";
    key2 = "\"" + fieldName + "\",";
    for (ci=0; ci<lines.length; ci++) {
        line = replace(lines[ci], "\r", "");
        if (indexOf(line, key1) == 0 || indexOf(line, key2) == 0) {
            comma = indexOf(line, ",");
            if (comma >= 0) {
                csvRawValue = substring(line, comma+1, lengthOf(line));
                csvCleanValue = projectAwareCleanCsvValue(csvRawValue);
                return "" + csvCleanValue;
            }
        }
    }
    return "";
}

function projectAwareReadFieldFromJsonText(textJson, fieldName) {
    pattern = "\"" + fieldName + "\"";
    p = indexOf(textJson, pattern);
    if (p < 0) return "";
    rest = substring(textJson, p + lengthOf(pattern), lengthOf(textJson));
    colon = indexOf(rest, ":");
    if (colon < 0) return "";
    v = String.trim(substring(rest, colon+1, lengthOf(rest)));
    if (v == "") return "";
    first = substring(v, 0, 1);
    if (first == "\"") {
        v2 = substring(v, 1, lengthOf(v));
        q = indexOf(v2, "\"");
        if (q < 0) return "";
        jsonOut = substring(v2, 0, q);
        jsonOut = replace(jsonOut, "\\/", "/");
        jsonOut = replace(jsonOut, "\\\\", "\\");
        jsonOut = replace(jsonOut, "\\\"", "\"");
        return "" + jsonOut;
    }
    comma = indexOf(v, ",");
    brace = indexOf(v, "}");
    end = lengthOf(v);
    if (comma >= 0 && comma < end) end = comma;
    if (brace >= 0 && brace < end) end = brace;
    jsonOut = String.trim(substring(v, 0, end));
    return "" + jsonOut;
}

function projectAwareCleanCsvValue(csvValueIn) {
    csvClean = "" + csvValueIn;
    csvClean = String.trim(replace(csvClean, "\r", ""));
    if (lengthOf(csvClean) >= 2) {
        csvFirst = substring(csvClean, 0, 1);
        csvLast = substring(csvClean, lengthOf(csvClean)-1, lengthOf(csvClean));
        if (csvFirst == "\"" && csvLast == "\"") {
            csvClean = substring(csvClean, 1, lengthOf(csvClean)-1);
            csvClean = replace(csvClean, "\"\"", "\"");
        }
    }
    return "" + csvClean;
}

function projectAwareBuildSourceImageListFromLayoutCheck() {
    if (!File.exists(projectAwareLayoutCheckCsv)) return "";
    textCsv = File.openAsString(projectAwareLayoutCheckCsv);
    lines = split(textCsv, "\n");
    if (lines.length < 2) return "";
    header = split(replace(lines[0], "\r", ""), ",");
    ix = projectAwareColumnIndex(header, "source_relative_path");
    if (ix < 0) return "";
    out = "";
    for (li=1; li<lines.length; li++) {
        line = replace(lines[li], "\r", "");
        if (line == "") continue;
        vals = split(line, ",");
        if (vals.length <= ix) continue;
        src = projectAwareCsvCell(vals, ix);
        if (src == "") continue;
        if (out != "") out = out + ";";
        out = out + src;
    }
    return out;
}

function projectAwareColumnIndex(header, name) {
    for (hi=0; hi<header.length; hi++) {
        h = projectAwareCleanCsvValue(header[hi]);
        if (h == name) return hi;
    }
    return -1;
}

function projectAwareCsvCell(vals, ix) {
    if (ix < 0 || vals.length <= ix) return "";
    cell = projectAwareCleanCsvValue(vals[ix]);
    return "" + cell;
}

function projectAwareParseFloat(s) {
    if (s == "") return 0;
    return parseFloat(s);
}

function projectAwareChooseFileInDirectory(title, startDir) {
    safeTitle = jsEscape(title);
    safeDir = jsEscape(startDir);
    chooserCode = "var JFileChooser=Packages.javax.swing.JFileChooser;var File=Packages.java.io.File;var IJ=Packages.ij.IJ;var fc=new JFileChooser();fc.setDialogTitle('" + safeTitle + "');fc.setFileSelectionMode(JFileChooser.FILES_ONLY);if('" + safeDir + "'!='')fc.setCurrentDirectory(new File('" + safeDir + "'));var r=fc.showOpenDialog(IJ.getInstance());var p='';if(r==JFileChooser.APPROVE_OPTION&&fc.getSelectedFile()!=null)p=String(fc.getSelectedFile().getAbsolutePath());p;";
    chosenFile = eval("js", chooserCode);
    if (chosenFile == "null") chosenFile = "";
    chosenFile = normalizeStoredPath(chosenFile);
    return chosenFile;
}

function projectAwareAppendLog(action, message) {
    if (projectAwareSessionsDir == "") return;
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "escribir el registro historico", 1)) return;
    makeDirIfMissing(projectAwareSessionsDir);
    logPath = projectAwareJoinPath(projectAwareSessionsDir, "cavity_projectaware_log.csv");
    if (!File.exists(logPath)) File.saveString("time_ms,macro_version,action,message\n", logPath);
    line = d2s(getTime(),0) + "," + projectAwareCsvEscape(macroVersion) + "," + projectAwareCsvEscape(action) + "," + projectAwareCsvEscape(message) + "\n";
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "escribir el registro historico", 1)) return;
    File.append(line, logPath);
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar el registro historico", 1)) return;
}

function projectAwareWriteActiveProjectMarker() {
    if (projectAwareSessionsDir == "") return;
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "escribir el marcador de proyecto activo", 1)) return;
    path = projectAwareJoinPath(projectAwareSessionsDir, "cavity_active_project.csv");
    text = "field,value\n";
    text = text + "project_dir," + projectAwareCsvEscape(projectAwareProjectDir) + "\n";
    text = text + "project_uid," + projectAwareCsvEscape(projectAwareProjectUid) + "\n";
    text = text + "sampleName," + projectAwareCsvEscape(sampleName) + "\n";
    text = text + "experimentalCondition," + projectAwareCsvEscape(experimentalCondition) + "\n";
    text = text + "montageId," + projectAwareCsvEscape(montageId) + "\n";
    text = text + "analysis_image_name," + projectAwareCsvEscape(projectAwareCurrentAnalysisImageName) + "\n";
    text = text + "analysis_image_role," + projectAwareCsvEscape(projectAwareCurrentAnalysisImageRole) + "\n";
    text = text + "analysis_image_path," + projectAwareCsvEscape(projectAwareCurrentAnalysisImagePath) + "\n";
    text = text + "results_csv," + projectAwareCsvEscape(projectAwareResultsCsv) + "\n";
    File.saveString(text, path);
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar el marcador de proyecto activo", 1)) return;
}

function projectAwareWriteViewSidecar(imagePath, originalTitle, viewTitle, preset, copyType, role, width, height) {
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "guardar el sidecar de vista", 1)) return 0;
    jsonPath = replace(imagePath, ".tif", ".json");
    text = "{\n";
    text = text + "  \"image_role\": \"" + jsonEscape(role) + "\",\n";
    text = text + "  \"created_by\": \"" + jsonEscape(macroVersion) + "\",\n";
    text = text + "  \"created_time_ms\": \"" + d2s(getTime(),0) + "\",\n";
    text = text + "  \"project_dir\": \"" + jsonEscape(projectAwareProjectDir) + "\",\n";
    text = text + "  \"source_title\": \"" + jsonEscape(originalTitle) + "\",\n";
    text = text + "  \"view_title\": \"" + jsonEscape(viewTitle) + "\",\n";
    text = text + "  \"preset\": \"" + jsonEscape(preset) + "\",\n";
    text = text + "  \"copy_type\": \"" + jsonEscape(copyType) + "\",\n";
    text = text + "  \"geometry_preserved\": \"" + (copyType == "Full image - same geometry") + "\",\n";
    text = text + "  \"width_px\": " + width + ",\n";
    text = text + "  \"height_px\": " + height + "\n";
    text = text + "}\n";
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "guardar el sidecar de vista", 1)) return 0;
    File.saveString(text, jsonPath);
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar el sidecar de vista", 1)) return 0;
    return 1;
}

function projectAwareWriteAnalysisSidecar(imagePath, activeTitle, label, notes, width, height) {
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "guardar el sidecar de analisis", 1)) return 0;
    jsonPath = replace(imagePath, ".tif", ".json");
    text = "{\n";
    text = text + "  \"image_role\": \"processed_analysis_image\",\n";
    text = text + "  \"created_by\": \"" + jsonEscape(macroVersion) + "\",\n";
    text = text + "  \"created_time_ms\": \"" + d2s(getTime(),0) + "\",\n";
    text = text + "  \"project_dir\": \"" + jsonEscape(projectAwareProjectDir) + "\",\n";
    text = text + "  \"analysis_label\": \"" + jsonEscape(label) + "\",\n";
    text = text + "  \"source_active_title\": \"" + jsonEscape(activeTitle) + "\",\n";
    text = text + "  \"processing_notes\": \"" + jsonEscape(notes) + "\",\n";
    text = text + "  \"geometry_preserved\": true,\n";
    text = text + "  \"measurement_warning\": \"Processed image. Use only if this processing is part of the defined measurement protocol.\",\n";
    text = text + "  \"width_px\": " + width + ",\n";
    text = text + "  \"height_px\": " + height + "\n";
    text = text + "}\n";
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "guardar el sidecar de analisis", 1)) return 0;
    File.saveString(text, jsonPath);
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar el sidecar de analisis", 1)) return 0;
    return 1;
}

function projectAwareAppendAnalysisRegistry(label, imagePath, activeTitle, notes, width, height) {
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "actualizar el registro de imagenes", 1)) return 0;
    makeDirIfMissing(projectAwareSessionsDir);
    reg = projectAwareJoinPath(projectAwareSessionsDir, "analysis_image_registry.csv");
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "actualizar el registro de imagenes", 1)) return 0;
    if (!File.exists(reg)) File.saveString("analysis_label,image_path,source_active_title,width_px,height_px,created_time_ms,processing_notes\n", reg);
    // R2: start with a literal so ImageJ parses the complete RHS as text.
    line = "" + projectAwareCsvEscape(label) + "," + projectAwareCsvEscape(imagePath) + "," + projectAwareCsvEscape(activeTitle) + "," + width + "," + height + "," + d2s(getTime(),0) + "," + projectAwareCsvEscape(notes) + "\n";
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "actualizar el registro de imagenes", 1)) return 0;
    File.append(line, reg);
    if (!v55ProjectBridgeMarkerClear(projectAwareProjectDir, "terminar el registro de imagenes", 1)) return 0;
    return 1;
}

function projectAwareJoinPath(dir, name) {
    if (dir == "") return name;
    if (endsWith(dir, "/") || endsWith(dir, "\\")) return dir + name;
    return dir + "/" + name;
}

function projectAwareCsvEscape(s) {
    s = "" + s;
    s = replace(s, "\"", "\"\"");
    return "\"" + s + "\"";
}

function makeDirIfMissing(path) {
    if (path == "") return;
    if (!File.exists(path)) File.makeDirectory(path);
}


// --- Cavity TEM Studio 5 project layer (v4 function names are compatibility API) ---

// Cavity_ROI_Studio_v9_0.ijm
// Cavity TEM Studio 5 integration layer for the mature v8.3.0 ROI toolset.
// This file is appended to Cavity_ROI_Toolset_v8_3_0.ijm in the distributable
// toolset. User-facing text is ASCII-only for broad Fiji compatibility.

var v4ToolVersion = "5.6.0";
var v4ProjectLoaded = 0;
var v4ProjectDir = "";
var v4ProjectSwitchInProgress = 0;
var v4BridgeDir = "";
var v4BridgeStaticDir = "";
var v4BridgePointerJson = "";
var v4BridgeGenerationId = "";
var v4ProjectFieldsCsv = "";
var v4ProjectFieldsText = "";
var v4RoiSetsCsv = "";
var v4ProjectId = "";
var v4ProjectName = "";
var v4StudyId = "";
var v4StudyName = "";
var v4SampleId = "";
var v4Material = "";
var v4Condition = "";
var v4SpecimenId = "";
var v4SpecimenLabel = "";
var v4AcquisitionId = "";
var v4AcquisitionLabel = "";
var v4MasterImage = "";
var v4MasterRole = "MASTER_ANALYTICAL";
var v4MasterRevisionId = "";
var v4CurrentMontagePointerPath = "";
var v4MasterRevisionManifestPath = "";
var v4MasterNativePlanPath = "";
var v4MasterFidelityReportPath = "";
var v4CurrentMontagePointerSha256 = "";
var v4MasterRevisionManifestSha256 = "";
var v4MasterNativePlanSha256 = "";
var v4MasterFidelitySha256 = "";
var v4MasterSha256 = "";
var v4MasterOwnershipSha256 = "";
var v4RevisionBindingReady = 0;
var v4RevisionBindingError = "";
var v55IntegrityCacheFingerprint = "";
var v55IntegrityCacheProjectId = "";
var v55IntegrityCacheUntilMs = 0;
var v55IntegrityCacheTtlMs = 5000;
var v55IntegrityLastEvidence = "";
var v55IntegrityLastError = "";
var v55FileCanonicalPath = "";
var v55FileSizeBytes = -1;
var v55FileModifiedMs = -1;
var v55FileSha256 = "";
var v56RequestId = "";
var v56PreparedAt = "";
var v56RoiDraftError = "";
var v56RoiDraftCount = 0;
var v56RoiSnapshotDirectory = "";
var v56RoiSnapshotEntryName = "";
var v56ResolvedSessionZip = "";
var v56ResolvedSessionRoiCount = 0;
var v56SessionValidationError = "";
var v56ResolvedSessionReviewStatus = "";
var v56ResolvedSessionQuantitativeReady = 0;
var v56ResolvedSessionPendingCount = 0;
var v56ResolvedSessionGeometryBlockerCount = 0;
// BEGIN GENERATED ROI SESSION CONTRACT. The release test requires byte-for-byte
// semantic equality with schemas/cavity_roi_session_contract_v2.json.
var v56RoiSessionContractJson = "{\"application_version\":\"5.6.0\",\"canonical_geometry_method_fields\":[\"classification\",\"bounds\",\"coordinates\",\"centroid\",\"area\",\"perimeter\"],\"commit_request_fields\":[\"schema_version\",\"application_version\",\"request_id\",\"prepared_at\",\"prepared_by\",\"reason\",\"launch_record_relative_path\",\"launch_record_sha256\",\"creation_context\",\"fiji_imagej_version\",\"java_version\",\"candidate_zip_sha256\",\"candidate_zip_size_bytes\",\"candidate_index_sha256\",\"candidate_index_size_bytes\",\"payload_sha256\"],\"creation_context_fields\":[\"project_version\",\"project_payload_sha256\",\"bridge_generation_id\",\"bridge_manifest_sha256\"],\"current_pointer_fields\":[\"schema_version\",\"application_version\",\"session_id\",\"session_relative_path\",\"manifest_relative_path\",\"manifest_sha256\",\"manifest_payload_sha256\",\"publication_status\",\"review_status\",\"quantitative_ready\",\"project_id\",\"montage_revision_id\",\"master_sha256\",\"published_at\",\"payload_sha256\"],\"fiji_metric_observation_fields\":[\"value\",\"unit\",\"method\",\"comparable_to_canonical\"],\"fiji_observation_fields\":[\"purpose\",\"imagej_roi_type\",\"geometry\",\"bounding_box\",\"centroid\",\"area\",\"perimeter\"],\"fiji_observation_purposes\":[\"diagnostic_only\"],\"geometry_entry_fields\":[\"entry_name\",\"imagej_roi_type\",\"geometry_class\",\"supported\",\"area\",\"perimeter\",\"blockers\"],\"geometry_metric_fields\":[\"method\",\"observed\",\"derived\",\"difference\",\"tolerance\",\"result\"],\"geometry_metric_tolerance_fields\":[\"absolute_area_px2\",\"absolute_length_px\",\"relative\"],\"geometry_precision_decimals\":6,\"geometry_validation_fields\":[\"status\",\"tolerance_px\",\"metric_tolerances\",\"supported_count\",\"unsupported_count\",\"entries\",\"blockers\"],\"published_session_states\":[{\"quantitative_ready\":false,\"review_status\":\"REVIEW_REQUIRED\"},{\"quantitative_ready\":true,\"review_status\":\"VERIFIED\"}],\"request_result_fields\":[\"schema_version\",\"application_version\",\"request_id\",\"session_id\",\"manifest_sha256\",\"manifest_payload_sha256\",\"published_at\",\"operator\",\"result\",\"review_status\",\"quantitative_ready\",\"payload_sha256\"],\"review_count_fields\":[\"pending\",\"reviewed\"],\"roi_index_fields\":[\"schema_version\",\"application_version\",\"geometry_precision_decimals\",\"binding\",\"rois\",\"payload_sha256\"],\"roi_index_row_fields\":[\"object_uuid\",\"object_id\",\"entry_name\",\"entry_sha256\",\"entry_size_bytes\",\"imagej_roi_type\",\"scientific_role\",\"roi_set_id\",\"object_class\",\"object_subtype\",\"geometry\",\"bounding_box\",\"centroid\",\"area_px2\",\"perimeter_px\",\"canonical_geometry_methods\",\"fiji_observation\",\"project_id\",\"montage_revision_id\",\"master_sha256\",\"master_dimensions\",\"master_dtype\",\"coordinate_system\",\"review_status\",\"include_in_statistics\",\"created_time\",\"modified_time\",\"semantic_sha256\"],\"roi_request_draft_authoritative\":false,\"roi_request_draft_fields\":[\"schema_version\",\"application_version\",\"authoritative\",\"binding\",\"rois\",\"payload_sha256\"],\"roi_request_draft_row_fields\":[\"object_uuid\",\"object_id\",\"entry_name\",\"entry_sha256\",\"entry_size_bytes\",\"scientific_role\",\"roi_set_id\",\"object_class\",\"object_subtype\",\"review_status\",\"include_in_statistics\",\"created_time\",\"modified_time\",\"fiji_observation\"],\"roi_session_manifest_fields\":[\"schema_version\",\"application_version\",\"session_id\",\"source_type\",\"publication_status\",\"review_status\",\"quantitative_ready\",\"published_at\",\"published_by\",\"reason\",\"source_request\",\"binding\",\"creation_context\",\"source_launch\",\"calibration_record\",\"artifacts\",\"roi_count\",\"role_counts\",\"review_counts\",\"geometry_validation\",\"semantic_fingerprints\",\"binary_inventory_sha256\",\"payload_sha256\"],\"row_review_statuses\":[\"pending\",\"reviewed\"],\"schema_version\":\"cavity_roi_session_contract_v2\",\"schemas\":{\"current_roi_session\":\"cavity_current_roi_session_v1\",\"roi_index\":\"cavity_roi_index_v2\",\"roi_request_draft\":\"cavity_roi_request_draft_v1\",\"roi_session\":\"cavity_roi_session_v2\",\"roi_session_request\":\"cavity_roi_session_request_v2\",\"roi_session_request_result\":\"cavity_roi_session_request_result_v2\"},\"scientific_binding_fields\":[\"project_id\",\"montage_revision_id\",\"revision_manifest_payload_sha256\",\"revision_manifest_file_sha256\",\"master_sha256\",\"master_dimensions\",\"master_dtype\",\"coordinate_system\",\"calibration_id\",\"calibration_record_sha256\",\"scale_input_signature\",\"scale_report_sha256\",\"toolset_version\",\"toolset_sha256\",\"studio_version\"],\"source_launch_fields\":[\"launch_record_relative_path\",\"launch_record_sha256\",\"installed_toolset_path\",\"installed_toolset_sha256\",\"source_toolset_path\",\"source_toolset_sha256\",\"fiji_root\",\"fiji_executable\",\"fiji_imagej_version\",\"java_version\"],\"source_request_fields\":[\"request_id\",\"request_relative_path\",\"commit_request_payload_sha256\",\"candidate_zip_sha256\",\"candidate_index_sha256\"]}";
// END GENERATED ROI SESSION CONTRACT.
var v4CalibrationId = "";
var v4PixelWidth = NaN;
var v4PixelHeight = NaN;
var v4PixelUnit = "nm";
var v4SurfaceId = "";
var v4SurfaceOriginDefined = 0;
var v4SurfaceOriginArcNm = 0;
var v4SurfaceOriginXpx = NaN;
var v4SurfaceOriginYpx = NaN;
var v4SurfaceTangentialSign = 1;
var v4ActiveRoiSetId = "CAVITIES";
var v4ActiveRoiSetName = "Cavidades";
var v4ActiveObjectType = "cavity";
var v4ActiveGeometry = "line_or_ellipse";
var v4ActiveIdPrefix = "CAV";
var v4ActiveScientificRole = "defect";
var v4ActiveProtocolId = "CAVITY_MANUAL_V1";
var v4ActiveStrokeColor = "#ff3b30";
var v4ActiveFillColor = "#46ff3b30";
var v4RunId = "";
var v4LastLocalXpx = NaN;
var v4LastLocalYpx = NaN;
var v4TraceMode = "";
var v4TraceTool = "";
var v4TraceSessionId = "";
var v4TraceConfidence = "high";
var v4TraceNote = "";
var v4TraceAdded = 0;
var v4TraceDeleted = 0;
var v4TraceLastObjectId = "";
var v4TraceCaptureOrder = 0;
var v4ScaleConflict = 0;
var v4ScaleConflictText = "";
var v4ScaleReconciliationStatus = "NOT_ANALYZED";
var v4ScaleMeasurementAllowed = 0;
var v4ImageScaleNmX = NaN;
var v4ImageScaleNmY = NaN;
var v4ImageScaleUnit = "";
var v4PanelsCsv = "";
var v4PanelGeometryJson = "";
var v4OwnershipImage = "";
var v4OwnershipLegendCsv = "";
var v4OwnershipCertified = 0;
var v4PanelOverlapPolicy = "unknown";
var v4PanelGeometryStatus = "UNAVAILABLE";
var v4PanelQuantitativeReady = 0;
var panelLastOwnerCode = 0;
var panelLastCoverageCount = 0;

// Non-destructive visual overlays. These values affect only the ImagePlus
// overlay; they never alter master pixels or the scientific calibration.
var v51ScaleBarLengthNm = 500;
var v51ScaleBarPosition = "Abajo derecha";
var v51ScaleBarColor = "#ffffff";
var v51ScaleBarBackground = "#000000";
var v51ScaleBarBackgroundAlpha = 160;
var v51ScaleBarThicknessPx = 8;
var v51ScaleBarFontPx = 28;
var v51ScaleBarMarginPx = 35;
var v51GuideSpacingNm = 100;
var v51GuideMaximumNm = 1000;
var v51GuideColor = "#00ffff";
var v51GuideWidthPx = 2;
var v51GuideDashed = 1;
var v51GuideBothSides = 0;
var v51GuideLabels = 1;
var v51LastExactAreaCsv = "";
var v51LastExactAreaMethod = "not_calculated";

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


function v4ShowPanel() {
    // Always re-synchronize with the project selected by Studio or inferred
    // from the active TIFF. This also handles Fiji starting with an older
    // remembered project before the launcher macro updates Preferences.
    v4SynchronizeProjectContext();
    if (v4ProjectLoaded && nImages() <= 0) {
        if (v4OpenOrActivateRegisteredMaster(1)) v4ApplyScale();
    }
    projectStatus = "1. Proyecto: NO CARGADO";
    if (v4ProjectLoaded) projectStatus = "1. Proyecto: " + v4ProjectName;
    imageStatus = "2. Imagen: no abierta";
    if (nImages() > 0) imageStatus = "2. Imagen: " + getTitle();
    scaleStatus = "3. Escala: no definida";
    if (!isNaN(v4PixelWidth) && v4PixelWidth > 0) scaleStatus = "3. Escala: " + d2s(v4PixelWidth, 8) + " " + v4PixelUnit + "/px (" + v4CalibrationId + ")";
    if (v4ScaleConflict) scaleStatus = "3. Escala: CONFLICTO; medicion bloqueada";
    surfaceStatus = "4. Superficie: opcional, no definida";
    if (surfaceDefined) {
        surfaceStatus = "4. Superficie: definida";
        if (v4SurfaceOriginDefined) surfaceStatus = surfaceStatus + "; origen s=0 definido";
        else surfaceStatus = surfaceStatus + "; falta origen s=0";
    }
    Dialog.create("Cavity TEM Studio v5.6.0");
    Dialog.addMessage(projectStatus + "\n" + imageStatus + "\n" + scaleStatus + "\n" + surfaceStatus);
    Dialog.addMessage("Conjunto ROI activo: " + v4ActiveRoiSetId + " - " + v4ActiveRoiSetName + "\nModo recomendado para cavidades: medir continuamente con una linea sobre cada diametro.");
    actions = newArray(
        "1. Iniciar o continuar medicion guiada",
        "2. Medir cavidades, dislocaciones o bucles",
        "3. Abrir o recargar proyecto",
        "4. Definir superficie, material y origen",
        "5. Seleccionar o editar una ROI",
        "6. Cambiar conjunto ROI",
        "7. Registrar la ROI dibujada",
        "8. Revisar objeto seleccionado",
        "9. Guardar sesion",
        "10. Exportar datos",
        "11. Mostrar tabla de objetos",
        "12. Herramientas de imagen",
        "13. Auditoria rapida",
        "14. Panel avanzado (nucleo ROI)",
        "Ayuda: flujo completo"
    );
    Dialog.addChoice("Siguiente accion:", actions, actions[0]);
    Dialog.show();
    action = Dialog.getChoice();
    if (action == actions[0]) v4StartGuidedMeasurement();
    else if (action == actions[1]) v4ShowMeasurementMenu();
    else if (action == actions[2]) v4OpenProject();
    else if (action == actions[3]) v4DefineSurfaceComplete();
    else if (action == actions[4]) activateSelectTool();
    else if (action == actions[5]) v4ChooseRoiSet();
    else if (action == actions[6]) v4AddSelectionToActiveSet();
    else if (action == actions[7]) v4ReviewSelectedObject();
    else if (action == actions[8]) v4SaveSession();
    else if (action == actions[9]) v4ExportAll();
    else if (action == actions[10]) v4ShowObjectTable();
    else if (action == actions[11]) imageToolsPanel();
    else if (action == actions[12]) v4QuickAudit();
    else if (action == actions[13]) showControlPanel();
    else v4ShowWorkflowHelp();
}

function v4ShowWorkflowHelp() {
    showMessage("Flujo de trabajo en Fiji",
        "ANTES DE FIJI\n"+
        "1. Abra o cree el proyecto en Cavity TEM Studio.\n"+
        "2. Registre el OME-TIFF maestro y una calibracion activa.\n\n"+
        "EN FIJI\n"+
        "3. Abra Fiji desde Studio: el master registrado se abre automaticamente. Si abre el TIFF manualmente, el toolset intentara localizar project.json ascendiendo por sus carpetas.\n"+
        "4. Elija abrir el montaje, aplicar la escala y cargar la sesion si existe.\n"+
        "5. Pulse Actualizar paneles SVG: se importan panels.csv, z-order y ownership; no hay que dibujar paneles manualmente.\n"+
        "6. Defina superficie, lado del material y origen s=0 si necesita perfiles de profundidad.\n"+
        "7. En la opcion 2 elija cavidades, dislocaciones o bucles. Los bucles admiten ovalo, elipse inclinada, polilinea y mano alzada, con ajuste eliptico reversible.\n"+
        "8. Durante dislocaciones y bucles use Borrar ultima o Supr solo para los trazos incorrectos; Esc finaliza la serie.\n"+
        "9. Use la cobertura SVG como area base, inclusion solo si necesita restringirla y exclusiones para restar zonas. Calcule el area exacta antes de publicar densidades.\n"+
        "10. Guarde la sesion con frecuencia y exporte al finalizar. Las barras y guias visuales son overlays no destructivos.\n\n"+
        "No instale Cavity_ROI_Studio_v9_0.ijm ni los modulos internos por separado. Instale unicamente Cavity_TEM_Studio_v5_6_0.ijm.");
}

function v4StartGuidedMeasurement() {
    if (!v4EnsureProject()) return;
    haveImage = nImages() > 0;
    masterAlreadyActive = 0;
    if (haveImage && v4MasterImage != "" && File.getName(v4MasterImage) == getTitle()) masterAlreadyActive = 1;
    haveSession = File.exists(v4SessionPath());
    panelCount = v4CountRoisOfType("panel");

    // Compatibility: some ImageJ macro interpreters reject compound boolean
    // expressions used directly as Dialog.addCheckbox defaults. Compute every
    // default as an explicit numeric variable before constructing the dialog.
    openMasterDefault = 1;
    if (masterAlreadyActive) openMasterDefault = 0;
    applyCalibrationDefault = 0;
    if (!isNaN(v4PixelWidth)) {
        if (v4PixelWidth > 0) applyCalibrationDefault = 1;
    }
    loadSessionDefault = 0;
    if (haveSession) loadSessionDefault = 1;
    createPanelsDefault = 0;
    if (panelCount == 0) createPanelsDefault = 1;

    Dialog.create("Preparar Fiji para medir");
    Dialog.addMessage("Proyecto: " + v4ProjectName + "\nLa preparacion no modifica los pixeles. La superficie solo es necesaria para calcular profundidad y posicion lateral.");
    Dialog.addCheckbox("Abrir o activar el montaje maestro registrado", openMasterDefault);
    Dialog.addCheckbox("Aplicar la calibracion activa", applyCalibrationDefault);
    Dialog.addCheckbox("Cargar la sesion guardada si el ROI Manager esta vacio", loadSessionDefault);
    Dialog.addCheckbox("Actualizar paneles desde SVG/panels.csv si faltan", createPanelsDefault);
    Dialog.addCheckbox("Activar el conjunto CAVITIES", 1);
    Dialog.addCheckbox("Definir ahora superficie, material y origen s=0", 0);
    Dialog.addCheckbox("Iniciar inmediatamente la medida continua", 1);
    Dialog.show();
    openMaster = Dialog.getCheckbox();
    applyScale = Dialog.getCheckbox();
    loadSaved = Dialog.getCheckbox();
    createPanels = Dialog.getCheckbox();
    activateCavities = Dialog.getCheckbox();
    defineSurfaceNow = Dialog.getCheckbox();
    startMeasure = Dialog.getCheckbox();

    if (openMaster) {
        if (v4MasterImage != "" && File.exists(v4MasterImage)) {
            if (!v4OpenOrActivateRegisteredMaster(1)) {
                showMessage("Montaje no disponible", "Fiji no pudo abrir la ruta exacta del montaje registrado:\n" + v4MasterImage);
                return;
            }
        } else { showMessage("Montaje no disponible", "No existe un OME-TIFF maestro registrado en el proyecto."); return; }
    }
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra el montaje maestro o una imagen de analisis antes de medir."); return; }
    projectAwareCurrentAnalysisImageName = getTitle();
    if (v4MasterImage != "" && toLowerCase(v55CanonicalPathJava(v4CurrentImageCanonicalPath())) == toLowerCase(v55CanonicalPathJava(v4MasterImage))) {
        projectAwareCurrentAnalysisImagePath = v4MasterImage;
        projectAwareCurrentAnalysisImageRole = v4MasterRole;
    } else {
        projectAwareCurrentAnalysisImagePath = "";
        projectAwareCurrentAnalysisImageRole = "ANALYSIS_IMAGE";
    }
    if (applyScale && !isNaN(v4PixelWidth) && v4PixelWidth > 0) { if (!v4ApplyScale()) return; }
    v4AttachImageContext();
    run("ROI Manager...");
    if (loadSaved && haveSession && roiManager("count") == 0) v4LoadSession();
    if (createPanels && v4CountRoisOfType("panel") == 0) v4CreatePanelsFromManifest();
    if (activateCavities) {
        v4ReadRoiSet("CAVITIES");
        if (!v55PersistActiveRoiSet("activar el conjunto CAVITIES")) return;
    }
    if (defineSurfaceNow) v4DefineSurfaceComplete();
    if (startMeasure) v4StartContinuousCavityMeasurement();
    else showMessage("Fiji preparado", "Proyecto, imagen y escala preparados. Defina la superficie si necesita profundidad y despues inicie la medida continua.");
}

function v4StartContinuousCavityMeasurement() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (!v4ReadRoiSet("CAVITIES")) { showMessage("Conjunto ausente", "No se encuentra el conjunto CAVITIES en fiji_bridge/roi_sets.csv."); return; }
    if (!v55PersistActiveRoiSet("activar la medicion continua")) return;
    if (v4CountRoisOfType("panel") == 0) showStatus("Aviso: no hay paneles. Podra medir, pero no se asignara el DM3 de origen hasta crearlos.");
    activateMeasureTool();
    shown = call("ij.Prefs.get", "cavity.v4.measure.help.shown", "0");
    if (shown != "1") {
        call("ij.Prefs.set", "cavity.v4.measure.help.shown", "1");
        showMessage("Medida continua activa", "Arrastre una linea de borde a borde sobre el diametro de cada cavidad. Al soltar, Fiji crea una ROI circular y registra la medida.\n\nRepita el arrastre para las siguientes cavidades. Pulse Esc para terminar. Para corregir una cavidad, use 'Seleccionar o editar'.");
    }
}

function v4CountRoisOfType(wantedType) {
    run("ROI Manager...");
    n = roiManager("count"); count = 0;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        t = Roi.getProperty("Object_type");
        if (t == "") t = currentRoiType();
        if (t == wantedType) count++;
    }
    return count;
}


function v4ShowMeasurementMenu() {
    if (!v4EnsureProject()) return;
    actions = newArray(
        "Cavidades: medir diametro continuamente",
        "Dislocaciones: polilinea",
        "Dislocaciones: mano alzada",
        "Bucles: ovalos",
        "Bucles: elipses inclinadas",
        "Bucles: polilinea cerrada (poligono)",
        "Bucles: contorno cerrado a mano alzada",
        "Bucles: ajustar seleccionada a elipse",
        "Bucles: restaurar forma original",
        "Seleccionar o editar una ROI",
        "Borrar seleccionada o ultimo trazo",
        "Finalizar serie automatica"
    );
    Dialog.create("2. Medir defectos");
    Dialog.addMessage("Las dislocaciones y los bucles se registran al terminar el trazo. No se solicita OK para cada objeto. Corrija las excepciones con Borrar ultima o Borrar seleccionada.");
    Dialog.addChoice("Modo:", actions, actions[0]);
    Dialog.show();
    action = Dialog.getChoice();
    if (action == actions[0]) v4StartContinuousCavityMeasurement();
    else if (action == actions[1]) v4StartAutomaticTrace("dislocation", "polyline");
    else if (action == actions[2]) v4StartAutomaticTrace("dislocation", "freeline");
    else if (action == actions[3]) v4StartAutomaticTrace("loop", "oval");
    else if (action == actions[4]) v4StartAutomaticTrace("loop", "ellipse");
    else if (action == actions[5]) v4StartAutomaticTrace("loop", "polygon");
    else if (action == actions[6]) v4StartAutomaticTrace("loop", "freehand");
    else if (action == actions[7]) v4FitSelectedLoopToEllipse();
    else if (action == actions[8]) v4RestoreSelectedLoopOriginal();
    else if (action == actions[9]) activateSelectTool();
    else if (action == actions[10]) v4DeleteSelectedTrace();
    else v4FinishAutomaticTrace(0);
}

function v51RepairPendingLoops() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("reparar bucles pendientes", 1)) return;
    if (nImages() <= 0) { showMessage("Reparar pendientes", "Abra la imagen asociada a la sesion antes de migrar ROIs."); return; }
    run("ROI Manager...");
    n = roiManager("count");
    pendingCount = 0;
    for (i=0; i<n; i++) {
        if (!safeRoiSelect(i)) continue;
        if (startsWith(toLowerCase(Roi.getName), "__v4_pending__")) pendingCount++;
    }
    if (pendingCount == 0) { showMessage("Reparar pendientes", "No hay ROIs __V4_PENDING__ en el ROI Manager. Las altas normales de v5.6.0 ya son transaccionales y no crean ese estado."); return; }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "crear la copia previa a reparar bucles", 1)) return;
    sessionsDir = projectAwareJoinPath(v4ProjectDir, "sessions");
    makeDirIfMissing(sessionsDir);
    stamp = v4Timestamp();
    backupPath = projectAwareJoinPath(sessionsDir, "roi_session_before_pending_repair_" + stamp + ".zip");
    roiManager("save", backupPath);
    previousSet = v4ActiveRoiSetId;
    if (!v4ReadRoiSet("LOOPS")) { showMessage("Conjunto LOOPS ausente", "No se modifico ninguna ROI.\n\nCopia de seguridad: " + backupPath); return; }
    choices = newArray("Ovalo", "Elipse inclinada", "Mano alzada cerrada", "Polilinea cerrada", "Omitir", "Terminar");
    migrated = 0;
    omitted = 0;
    invalid = 0;
    stopped = 0;
    // Work by stable indexes; registration is in-place and never adds/deletes.
    for (i=0; i<n; i++) {
        if (stopped) break;
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "reparar los bucles pendientes", 1)) return;
        if (!safeRoiSelect(i)) continue;
        pendingName = Roi.getName;
        if (!startsWith(toLowerCase(pendingName), "__v4_pending__")) continue;
        getStatistics(pendingArea);
        if (pendingArea <= 0 || (selectionType != 1 && selectionType != 2 && selectionType != 3 && selectionType != 4)) {
            invalid++;
            continue;
        }
        Dialog.create("Clasificar bucle pendiente " + (migrated+omitted+invalid+1) + "/" + pendingCount);
        Dialog.addMessage("ROI: " + pendingName + "\nIndice: " + i + "\n\nElija el tipo observando la geometria. No se infiere ni se transforma automaticamente. Omitir conserva la ROI exactamente como esta.");
        Dialog.addChoice("Tipo de bucle:", choices, choices[4]);
        Dialog.show();
        choice = Dialog.getChoice();
        if (choice == "Terminar") { stopped = 1; break; }
        if (choice == "Omitir") { omitted++; continue; }
        if (choice == "Elipse inclinada" && !v4SelectionIsEllipseRoi()) {
            showMessage("Elipse no confirmada", "La ROI no es una EllipseRoi inclinable de ImageJ. Se ha omitido para evitar cambiar o etiquetar falsamente su geometria. Puede ajustarla despues con Ajustar a elipse.");
            omitted++;
            continue;
        }
        if (!v4StoreCurrentRoiClone("CavityV51PendingBackup")) { invalid++; continue; }
        id = v4NextObjectId("LOOP");
        if (!safeRoiSelect(i)) { v4ClearStoredRoiClone("CavityV51PendingBackup"); invalid++; continue; }
        subtype = "oval_loop";
        method = "migrated_pending_oval_loop";
        if (choice == "Elipse inclinada") { subtype = "inclined_ellipse_loop"; method = "migrated_pending_inclined_ellipse_loop"; }
        else if (choice == "Mano alzada cerrada") { subtype = "closed_freehand_loop"; method = "migrated_pending_closed_freehand_loop"; }
        else if (choice == "Polilinea cerrada") { subtype = "closed_polygon_loop"; method = "migrated_pending_closed_polygon_loop"; }
        now = d2s(getTime(),0);
        v4SetCoreProperties(id, v4Uuid(), now);
        Roi.setProperty("Object_subtype", subtype);
        Roi.setProperty("Measurement_method", method);
        Roi.setProperty("Closed_contour", "1");
        Roi.setProperty("Closure_validation", "user_confirmed_during_pending_migration");
        Roi.setProperty("Migration_source_name", pendingName);
        Roi.setProperty("Migration_backup_zip", backupPath);
        Roi.setProperty("Migration_reviewed_by_user", "1");
        Roi.setProperty("Auto_accepted", "0");
        Roi.setName(v4VisibleLoopName(id, subtype));
        v4SetGeometryProperties();
        v4SetLoopMetrics();
        applyLoopStyle();
        roiManager("update");
        safeRoiSelect(i);
        if (propString("Object_id","") != id || startsWith(toLowerCase(Roi.getName), "__v4_pending__")) {
            v4RestoreStoredRoiClone("CavityV51PendingBackup", 1);
            roiManager("update");
            invalid++;
            continue;
        }
        v4ClearStoredRoiClone("CavityV51PendingBackup");
        v4RefreshSpatialProperties(i);
        migrated++;
    }
    migratedPath = "";
    if (migrated > 0) {
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "guardar los bucles reparados", 1)) return;
        migratedPath = projectAwareJoinPath(sessionsDir, "roi_session_pending_repaired_" + stamp + ".zip");
        roiManager("save", migratedPath);
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar la reparacion de bucles", 1)) return;
    if (previousSet != "") v4ReadRoiSet(previousSet);
    restyleAllRois();
    showAllRois();
    message = "Encontradas: " + pendingCount + "\nMigradas: " + migrated + "\nOmitidas: " + omitted + "\nInvalidas/no procesadas: " + invalid + "\n\nCopia previa inmutable:\n" + backupPath;
    if (migratedPath != "") message = message + "\n\nSesion migrada para revisar:\n" + migratedPath + "\n\nLa sesion canonica no se ha sobrescrito. Tras revisar, use Guardar sesion si desea adoptarla.";
    showMessage("Reparacion segura finalizada", message);
}

function v4StartAutomaticTrace(mode, toolName) {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (v4TraceMode != "") v4FinishAutomaticTrace(1);
    if (mode == "dislocation") {
        if (!v4ReadRoiSet("DISLOCATIONS")) { showMessage("Conjunto ausente", "No se encuentra DISLOCATIONS en roi_sets.csv."); return; }
        title = "Serie de dislocaciones";
        help = "Cada polilinea se termina con doble clic; cada linea libre, al soltar el raton. El trazo se registra automaticamente.";
    } else if (mode == "loop") {
        if (!v4ReadRoiSet("LOOPS")) { showMessage("Conjunto ausente", "No se encuentra LOOPS en roi_sets.csv."); return; }
        title = "Serie de bucles cerrados";
        help = "Un bucle debe ser un area cerrada. El poligono se cierra con doble clic; el contorno libre se cierra al soltar; el ovalo se completa al soltar.";
    } else return;
    Dialog.create(title);
    Dialog.addMessage(help + "\n\nSolo se confirma esta configuracion una vez para toda la serie. Durante la captura use el boton rojo Borrar ultima para retirar errores.");
    Dialog.addChoice("Confianza comun:", newArray("high", "medium", "low"), v4TraceConfidence);
    Dialog.addString("Nota comun:", v4TraceNote, 42);
    Dialog.show();
    v4TraceConfidence = Dialog.getChoice();
    v4TraceNote = Dialog.getString();
    v4TraceMode = mode;
    v4TraceTool = toolName;
    v4TraceSessionId = "TRACE_" + d2s(getTime(),0);
    v4TraceAdded = 0;
    v4TraceDeleted = 0;
    v4TraceCaptureOrder = 0;
    v4TraceLastObjectId = "";
    if (!v55PersistActiveRoiSet("activar el trazado automatico")) return;
    v4SetTraceImageProperty("CavityV4TraceMode", v4TraceMode);
    v4SetTraceImageProperty("CavityV4TraceTool", v4TraceTool);
    v4SetTraceImageProperty("CavityV4TraceSession", v4TraceSessionId);
    v4SetTraceImageProperty("CavityV4TraceBusy", "0");
    v4InstallTraceListener();
    installInteractionListeners(0);
    v4ApplyTraceTool();
    v4ShowTraceController();
    showStatus(v4TraceModeLabel() + " activo: cada trazo terminado se acepta automaticamente; Borrar ultima elimina los errores.");
}

function v4InstallTraceListener() {
    if (nImages() <= 0) return;
    js = "var IJ=Packages.ij.IJ;var Roi=Packages.ij.gui.Roi;var RoiListener=Packages.ij.gui.RoiListener;var Executer=Packages.ij.Executer;var Runnable=Packages.java.lang.Runnable;var Thread=Packages.java.lang.Thread;";
    js = js + "var imp=IJ.getImage();if(imp!=null){var old=imp.getProperty('CavityV4TraceListener');if(old!=null){try{Roi.removeRoiListener(old);}catch(ignore){}}";
    js = js + "function submit(cmd){var body={run:function(){IJ.resetEscape();new Executer(cmd).run();}};var r;if(typeof JavaAdapter!='undefined')r=new JavaAdapter(Runnable,body);else{var R=Java.extend(Runnable);r=new R(body);}var t=new Thread(r);t.setDaemon(true);t.start();}";
    js = js + "var body={roiModified:function(changedImp,id){try{if(changedImp!=imp||id!=RoiListener.COMPLETED)return;var mode=imp.getProperty('CavityV4TraceMode');if(mode==null||String(mode)=='')return;var busy=imp.getProperty('CavityV4TraceBusy');if(busy!=null&&String(busy)=='1')return;var completed=changedImp.getRoi();if(completed==null)return;imp.setProperty('CavityV4CompletedRoi',completed.clone());imp.setProperty('CavityV4TraceBusy','1');submit('Cavity V9: registrar trazo automatico');}catch(ex){imp.setProperty('CavityV4CompletedRoi',null);imp.setProperty('CavityV4TraceBusy','0');IJ.log('Cavity automatic trace listener: '+ex);}}};";
    js = js + "var listener;if(typeof JavaAdapter!='undefined')listener=new JavaAdapter(RoiListener,body);else{var L=Java.extend(RoiListener);listener=new L(body);}Roi.addRoiListener(listener);imp.setProperty('CavityV4TraceListener',listener);}";
    eval("js", js);
}

function v4RemoveTraceListener() {
    if (nImages() <= 0) return;
    js = "var IJ=Packages.ij.IJ;var Roi=Packages.ij.gui.Roi;var imp=IJ.getImage();if(imp!=null){var old=imp.getProperty('CavityV4TraceListener');if(old!=null){try{Roi.removeRoiListener(old);}catch(ignore){}}imp.setProperty('CavityV4TraceListener',null);imp.setProperty('CavityV4TraceMode','');imp.setProperty('CavityV4TraceTool','');imp.setProperty('CavityV4TraceBusy','0');imp.setProperty('CavityV4CompletedRoi',null);imp.setProperty('CavityV4RegistrationRoi',null);}";
    eval("js", js);
}

function v4SetTraceImageProperty(key, value) {
    if (nImages() <= 0) return;
    js = "var imp=Packages.ij.IJ.getImage();if(imp!=null)imp.setProperty('" + jsEscape(key) + "','" + jsEscape(value) + "');";
    eval("js", js);
}

function v4RestoreCompletedTraceSnapshot() {
    if (nImages() <= 0) return 0;
    js = "var imp=Packages.ij.IJ.getImage(),ok='0';if(imp!=null){var saved=imp.getProperty('CavityV4CompletedRoi');if(saved!=null){try{imp.setRoi(saved.clone());ok='1';}catch(ex){Packages.ij.IJ.log('Cavity completed ROI restore: '+ex);}imp.setProperty('CavityV4CompletedRoi',null);}}String(ok);";
    restored = eval("js", js);
    if (restored == "1") return 1;
    return 0;
}

function v4AutoRegisterCompletedTrace() {
    if (v4TraceMode == "" || nImages() <= 0) { v4SetTraceImageProperty("CavityV4TraceBusy", "0"); return; }
    if (!v4PrepareImageForMeasurement(1)) { v4SetTraceImageProperty("CavityV4TraceBusy", "0"); return; }
    // RoiListener.COMPLETED runs asynchronously. Restore the clone captured by
    // the listener before any double click or tool event can clear the ROI.
    v4RestoreCompletedTraceSnapshot();
    if (!v4TraceSelectionValid()) {
        beep();
        showStatus("Trazo no registrado: " + v4TraceValidationMessage());
        v4SetTraceImageProperty("CavityV4TraceBusy", "0");
        v4ApplyTraceTool();
        return;
    }
    if (v4TraceMode == "dislocation") v4ReadRoiSet("DISLOCATIONS");
    else v4ReadRoiSet("LOOPS");
    run("ROI Manager...");
    before = roiManager("count");
    v4AddSelectionToActiveSet();
    after = roiManager("count");
    if (after <= before) {
        v4SetTraceImageProperty("CavityV4TraceBusy", "0");
        v4ApplyTraceTool();
        return;
    }
    idx = after - 1;
    safeRoiSelect(idx);
    id = propString("Object_id", Roi.getName);
    v4TraceCaptureOrder++;
    Roi.setProperty("Trace_session_id", v4TraceSessionId);
    Roi.setProperty("Capture_order", d2s(v4TraceCaptureOrder,0));
    Roi.setProperty("Auto_accepted", "1");
    Roi.setProperty("Capture_mode", "auto_accept_delete_if_wrong");
    Roi.setProperty("Confidence", v4TraceConfidence);
    Roi.setProperty("Analyst_note", v4TraceNote);
    Roi.setProperty("Review_status", "pending");
    Roi.setProperty("Measurement_method", v4TraceMeasurementMethod());
    Roi.setProperty("Object_subtype", v4TraceObjectSubtype());
    if (v4TraceMode == "loop") {
        Roi.setProperty("Closed_contour", "1");
        Roi.setProperty("Closure_validation", "area_roi_closed");
        v4SetLoopMetrics();
    } else {
        Roi.setProperty("Closed_contour", "0");
        Roi.setProperty("Closure_validation", "not_applicable");
    }
    Roi.setProperty("Modified_time_ms", d2s(getTime(),0));
    roiManager("update");
    v4RefreshSpatialProperties(idx);
    safeRoiSelect(idx);
    v4TraceLastObjectId = id;
    v4TraceAdded++;
    undoKind = "add";
    undoObjectId = id;
    undoDeletedName = "";
    undoAvailable = 1;
    v4SetTraceImageProperty("CavityV4TraceBusy", "0");
    v4RefreshTraceController();
    // Keep the last registered ROI selected and editable. Starting the next
    // drawing naturally replaces the active selection without deleting it.
    safeRoiSelect(idx);
    registeredVisibleName = Roi.getName;
    showStatus("Registrado " + registeredVisibleName + " [" + id + "]. Puede editarlo o empezar el siguiente trazo.");
}

function v4TraceSelectionValid() {
    if (selectionType < 0) return 0;
    if (v4TraceMode == "dislocation") {
        if (selectionType != 5 && selectionType != 6 && selectionType != 7) return 0;
        Roi.getCoordinates(tx, ty);
        if (tx.length < 2) return 0;
        if (polylineLengthNm(tx,ty) > 0) return 1;
        return 0;
    }
    if (v4TraceMode == "loop") {
        if (selectionType != 1 && selectionType != 2 && selectionType != 3 && selectionType != 4) return 0;
        getStatistics(traceAreaPx);
        if (traceAreaPx <= 0) return 0;
        if (selectionType != 1) {
            Roi.getCoordinates(tx, ty);
            if (tx.length < 3) return 0;
        }
        return 1;
    }
    return 0;
}

function v4TraceValidationMessage() {
    if (v4TraceMode == "loop") return "el bucle debe cerrarse y formar un area. Use Ovalo, Elipse inclinada, Polilinea cerrada o Mano alzada cerrada.";
    return "la dislocacion debe ser una linea, polilinea o linea a mano alzada con longitud mayor que cero.";
}

function v4TraceMeasurementMethod() {
    if (v4TraceMode == "dislocation" && v4TraceTool == "polyline") return "automatic_polyline_trace";
    if (v4TraceMode == "dislocation" && v4TraceTool == "freeline") return "automatic_freehand_line_trace";
    if (v4TraceMode == "loop" && v4TraceTool == "oval") return "automatic_oval_loop";
    if (v4TraceMode == "loop" && v4TraceTool == "ellipse") return "automatic_inclined_ellipse_loop";
    if (v4TraceMode == "loop" && v4TraceTool == "polygon") return "automatic_closed_polygon_loop";
    if (v4TraceMode == "loop" && v4TraceTool == "freehand") return "automatic_closed_freehand_loop";
    return "automatic_trace";
}

function v4TraceObjectSubtype() {
    if (v4TraceMode == "dislocation") return "line_dislocation";
    if (v4TraceTool == "oval") return "oval_loop";
    if (v4TraceTool == "ellipse") return "inclined_ellipse_loop";
    if (v4TraceTool == "polygon") return "closed_polygon_loop";
    if (v4TraceTool == "freehand") return "closed_freehand_loop";
    return "closed_loop";
}

function v4SelectionIsEllipseRoi() {
    if (nImages() <= 0 || selectionType < 0) return 0;
    result = eval("js", "var imp=Packages.ij.IJ.getImage(),r=imp==null?null:imp.getRoi();String(r!=null&&String(r.getClass().getName())=='ij.gui.EllipseRoi'?'1':'0');");
    if (result == "1") return 1;
    return 0;
}

function v4LoopSubtypeForCurrentSelection() {
    if (v4TraceMode == "loop") {
        if (v4TraceTool == "ellipse") return "inclined_ellipse_loop";
        if (v4TraceTool == "oval") return "oval_loop";
        if (v4TraceTool == "polygon") return "closed_polygon_loop";
        if (v4TraceTool == "freehand") return "closed_freehand_loop";
    }
    // EllipseRoi inherits PolygonRoi/FREEROI, so identify the Java class
    // before interpreting ImageJ's numeric selectionType.
    if (v4SelectionIsEllipseRoi()) return "inclined_ellipse_loop";
    if (selectionType == 1) return "oval_loop";
    if (selectionType == 2) return "closed_polygon_loop";
    if (selectionType == 3 || selectionType == 4) return "closed_freehand_loop";
    return "closed_loop";
}

function v4VisibleLoopName(id, subtype) {
    serial = serialFromId(id);
    if (serial < 1) serial = 1;
    stem = "loop_mano_";
    s = toLowerCase(subtype);
    if (indexOf(s, "ellipse") >= 0 || indexOf(s, "elipse") >= 0 || indexOf(s, "fitted") >= 0) stem = "loop_elipse_";
    else if (indexOf(s, "oval") >= 0) stem = "loop_ovalo_";
    else if (indexOf(s, "polygon") >= 0 || indexOf(s, "polyline") >= 0 || indexOf(s, "poliline") >= 0) stem = "loop_polilinea_";
    else if (indexOf(s, "freehand") >= 0 || indexOf(s, "mano") >= 0) stem = "loop_mano_";
    return stem + IJ.pad(serial, 6);
}

function v4EncodeCurrentCoordinates() {
    if (selectionType < 0) return "";
    Roi.getCoordinates(xs, ys);
    encoded = "";
    for (ci=0; ci<xs.length; ci++) {
        if (ci > 0) encoded = encoded + ";";
        encoded = encoded + d2s(xs[ci],6) + ":" + d2s(ys[ci],6);
    }
    return encoded;
}

function v4CopyStoredRoiAttributesToCurrent(key) {
    if (nImages() <= 0 || selectionType < 0) return 0;
    js = "var imp=Packages.ij.IJ.getImage(),ok='0';if(imp!=null){var source=imp.getProperty('" + jsEscape(key) + "'),target=imp.getRoi();if(source!=null&&target!=null){try{var props=source.getProperties();if(props!=null)target.setProperties(props);target.setName(source.getName());ok='1';}catch(ex){Packages.ij.IJ.log('Cavity ROI attribute transfer: '+ex);}}}String(ok);";
    copied = eval("js", js);
    if (copied == "1") return 1;
    return 0;
}

function v4FitSelectedLoopToEllipse() {
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra primero el montaje."); return; }
    if (!v55VerifyQuantitativeIntegrity("ajustar el bucle a elipse", 1, 1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) { showMessage("Sin bucle", "Seleccione un bucle a mano alzada o polilinea."); return; }
    safeRoiSelect(idx);
    type = propString("Object_type", currentRoiType());
    if (type != "dislocation_loop") { showMessage("Objeto incompatible", "El ajuste solo se aplica a bucles cerrados."); return; }
    if (propString("Fit_state","") == "ellipse_fit") {
        showMessage("Ajuste ya activo", "Este bucle ya muestra el ajuste eliptico. Use Restaurar original para volver al contorno conservado.");
        return;
    }
    originalSelectionType = selectionType;
    if (originalSelectionType != 2 && originalSelectionType != 3 && originalSelectionType != 4) {
        showMessage("Forma no ajustable", "Seleccione un bucle de polilinea o mano alzada. Los ovalos y elipses ya son formas parametricas.");
        return;
    }
    originalCoordinates = v4EncodeCurrentCoordinates();
    if (originalCoordinates == "") { showMessage("Forma vacia", "No se pudieron leer los puntos del contorno."); return; }
    originalSubtype = propString("Object_subtype", v4LoopSubtypeForCurrentSelection());
    originalMethod = propString("Measurement_method", "");
    originalName = Roi.getName;
    id = propString("Object_id", propString("Feature_id", ""));
    if (id == "") { showMessage("Bucle sin ID", "Sincronice la sesion antes de ajustar este bucle."); return; }
    // Capture audited before/after metrics together with the reversible
    // coordinates. Fit Ellipse changes the scientific geometry.
    v4SetGeometryProperties();
    originalAreaNm2 = propNumber("Projected_area_nm2", NaN);
    originalPerimeterNm = propNumber("Perimeter_nm", NaN);
    if (startsWith(toLowerCase(originalName), "__v4_pending__") || startsWith(originalName, "LOOP_")) originalName = v4VisibleLoopName(id, originalSubtype);
    if (!v4StoreCurrentRoiClone("CavityV4FitSourceRoi")) { showMessage("Ajuste cancelado", "No se pudo conservar el contorno original."); return; }
    v4SetTraceImageProperty("CavityV4TraceBusy", "1");
    run("Fit Ellipse");
    if (!v4SelectionIsEllipseRoi()) {
        v4RestoreStoredRoiClone("CavityV4FitSourceRoi", 1);
        v4SetTraceImageProperty("CavityV4TraceBusy", "0");
        showMessage("Ajuste no disponible", "ImageJ no pudo calcular una elipse para este contorno.");
        return;
    }
    if (!v4CopyStoredRoiAttributesToCurrent("CavityV4FitSourceRoi")) {
        v4RestoreStoredRoiClone("CavityV4FitSourceRoi", 1);
        v4SetTraceImageProperty("CavityV4TraceBusy", "0");
        showMessage("Ajuste cancelado", "No se pudieron transferir de forma segura los metadatos del bucle.");
        return;
    }
    Roi.setProperty("Original_coordinates_px", originalCoordinates);
    Roi.setProperty("Original_selection_type", d2s(originalSelectionType,0));
    Roi.setProperty("Original_object_subtype", originalSubtype);
    Roi.setProperty("Original_measurement_method", originalMethod);
    Roi.setProperty("Original_visible_name", originalName);
    Roi.setProperty("Fit_state", "ellipse_fit");
    Roi.setProperty("Fit_method", "ImageJ_Fit_Ellipse");
    Roi.setProperty("Derived_geometry", "1");
    Roi.setProperty("Fit_source_subtype", originalSubtype);
    Roi.setProperty("Object_subtype", "fitted_ellipse_loop");
    Roi.setProperty("Measurement_method", "ellipse_fit_from_" + originalSubtype);
    Roi.setName(v4VisibleLoopName(id, "fitted_ellipse_loop"));
    v4SetGeometryProperties();
    fittedAreaNm2 = propNumber("Projected_area_nm2", NaN);
    fittedPerimeterNm = propNumber("Perimeter_nm", NaN);
    Roi.setProperty("Fit_original_area_nm2", d2s(originalAreaNm2,6));
    Roi.setProperty("Fit_original_perimeter_nm", d2s(originalPerimeterNm,6));
    Roi.setProperty("Fit_area_nm2", d2s(fittedAreaNm2,6));
    Roi.setProperty("Fit_perimeter_nm", d2s(fittedPerimeterNm,6));
    if (!isNaN(originalAreaNm2) && originalAreaNm2 > 0) Roi.setProperty("Fit_area_change_percent", d2s(100*(fittedAreaNm2-originalAreaNm2)/originalAreaNm2,6));
    if (!isNaN(originalPerimeterNm) && originalPerimeterNm > 0) Roi.setProperty("Fit_perimeter_change_percent", d2s(100*(fittedPerimeterNm-originalPerimeterNm)/originalPerimeterNm,6));
    applyLoopStyle();
    Roi.setProperty("Modified_time_ms", d2s(getTime(),0));
    roiManager("update");
    v4ClearStoredRoiClone("CavityV4FitSourceRoi");
    safeRoiSelect(idx);
    v4SetTraceImageProperty("CavityV4TraceBusy", "0");
    v4RefreshTraceController();
    showStatus("Ajuste eliptico activo. El contorno original permanece guardado y puede restaurarse.");
}

function v4RestoreSelectedLoopOriginal() {
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra primero el montaje."); return; }
    if (!v55VerifyQuantitativeIntegrity("restaurar el contorno original del bucle", 1, 1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) { showMessage("Sin bucle", "Seleccione un bucle con ajuste eliptico."); return; }
    safeRoiSelect(idx);
    if (propString("Object_type",currentRoiType()) != "dislocation_loop" || propString("Fit_state","") != "ellipse_fit") {
        showMessage("Sin original guardado", "La ROI seleccionada no tiene un ajuste eliptico reversible.");
        return;
    }
    encoded = propString("Original_coordinates_px","");
    if (encoded == "") { showMessage("Original no disponible", "No hay coordenadas originales conservadas en esta ROI."); return; }
    originalSelectionType = round(propNumber("Original_selection_type",2));
    originalSubtype = propString("Original_object_subtype","closed_freehand_loop");
    originalMethod = propString("Original_measurement_method","");
    originalName = propString("Original_visible_name","");
    id = propString("Object_id", propString("Feature_id",""));
    if (!v4StoreCurrentRoiClone("CavityV4FittedSourceRoi")) { showMessage("Restauracion cancelada", "No se pudo conservar la ROI ajustada durante la operacion."); return; }
    pairs = split(encoded, ";");
    rx = newArray(pairs.length);
    ry = newArray(pairs.length);
    valid = 0;
    for (ri=0; ri<pairs.length; ri++) {
        xy = split(pairs[ri], ":");
        if (xy.length < 2) continue;
        rx[valid] = parseFloat(xy[0]);
        ry[valid] = parseFloat(xy[1]);
        valid++;
    }
    if (valid < 3) {
        v4ClearStoredRoiClone("CavityV4FittedSourceRoi");
        showMessage("Original no valido", "Las coordenadas conservadas no forman un contorno.");
        return;
    }
    if (valid != pairs.length) {
        x2 = newArray(valid); y2 = newArray(valid);
        for (ri=0; ri<valid; ri++) { x2[ri]=rx[ri]; y2[ri]=ry[ri]; }
        rx=x2; ry=y2;
    }
    restoreKind = "polygon";
    if (originalSelectionType == 3) restoreKind = "freehand";
    v4SetTraceImageProperty("CavityV4TraceBusy", "1");
    makeSelection(restoreKind, rx, ry);
    if (!v4CopyStoredRoiAttributesToCurrent("CavityV4FittedSourceRoi")) {
        v4RestoreStoredRoiClone("CavityV4FittedSourceRoi", 1);
        v4SetTraceImageProperty("CavityV4TraceBusy", "0");
        showMessage("Restauracion cancelada", "No se pudieron transferir de forma segura los metadatos.");
        return;
    }
    Roi.setProperty("Fit_state", "original");
    Roi.setProperty("Derived_geometry", "0");
    Roi.setProperty("Object_subtype", originalSubtype);
    Roi.setProperty("Measurement_method", originalMethod);
    if (originalName == "") originalName = v4VisibleLoopName(id, originalSubtype);
    Roi.setName(originalName);
    v4SetGeometryProperties();
    applyLoopStyle();
    Roi.setProperty("Modified_time_ms", d2s(getTime(),0));
    roiManager("update");
    v4ClearStoredRoiClone("CavityV4FittedSourceRoi");
    safeRoiSelect(idx);
    v4SetTraceImageProperty("CavityV4TraceBusy", "0");
    v4RefreshTraceController();
    showStatus("Contorno original restaurado. El identificador " + id + " no ha cambiado.");
}

function v4SetLoopMetrics() {
    updateScaleMaybe();
    getSelectionBounds(lx,ly,lw,lh);
    getStatistics(loopAreaPx);
    loopAreaNm2 = loopAreaPx * nmPerPixelX * nmPerPixelY;
    perimeterNm = 0;
    if (selectionType == 1 || v4SelectionIsEllipseRoi()) {
        a = propNumber("Major_axis_nm", max2(lw*nmPerPixelX,lh*nmPerPixelY)) / 2;
        b = propNumber("Minor_axis_nm", min2(lw*nmPerPixelX,lh*nmPerPixelY)) / 2;
        if (a > 0 && b > 0) perimeterNm = PI_VAL * (3*(a+b) - sqrt((3*a+b)*(a+3*b)));
    } else {
        Roi.getCoordinates(loopXs, loopYs);
        perimeterNm = v4ClosedPolylineLengthNm(loopXs, loopYs);
    }
    Roi.setProperty("Perimeter_nm", d2s(perimeterNm,6));
    if (perimeterNm > 0 && loopAreaNm2 > 0) {
        circularity = 4*PI_VAL*loopAreaNm2/(perimeterNm*perimeterNm);
        if (circularity > 1) circularity = 1;
        if (circularity < 0) circularity = 0;
        Roi.setProperty("Circularity", d2s(circularity,6));
    }
}

function v4ClosedPolylineLengthNm(xs, ys) {
    if (xs.length < 2) return 0;
    total = polylineLengthNm(xs,ys);
    dx = (xs[0]-xs[xs.length-1])*nmPerPixelX;
    dy = (ys[0]-ys[ys.length-1])*nmPerPixelY;
    return total + sqrt(dx*dx+dy*dy);
}

function v4SwitchTraceTool(toolName) {
    if (v4TraceMode == "") { showMessage("Sin serie activa", "Inicie primero una serie de dislocaciones o bucles."); return; }
    if (v4TraceMode == "dislocation" && toolName != "polyline" && toolName != "freeline") return;
    if (v4TraceMode == "loop" && toolName != "oval" && toolName != "ellipse" && toolName != "polygon" && toolName != "freehand") return;
    v4TraceTool = toolName;
    v4SetTraceImageProperty("CavityV4TraceTool", v4TraceTool);
    v4ApplyTraceTool();
    v4RefreshTraceController();
}

function v4ApplyTraceTool() {
    if (v4TraceTool == "polyline") setTool("polyline");
    else if (v4TraceTool == "freeline") setTool("freeline");
    else if (v4TraceTool == "oval") setTool("oval");
    else if (v4TraceTool == "ellipse") setTool("elliptical");
    else if (v4TraceTool == "polygon") setTool("polygon");
    else if (v4TraceTool == "freehand") setTool("freehand");
}

function v4TraceModeLabel() {
    if (v4TraceMode == "dislocation") return "Dislocaciones lineales";
    if (v4TraceMode == "loop") return "Bucles cerrados";
    return "Sin serie automatica";
}

function v4TraceToolLabel() {
    if (v4TraceTool == "polyline") return "Polilinea; doble clic para terminar";
    if (v4TraceTool == "freeline") return "Linea a mano alzada; soltar para terminar";
    if (v4TraceTool == "oval") return "Ovalo; soltar para terminar";
    if (v4TraceTool == "ellipse") return "Elipse inclinada; arrastrar eje y ajustar ancho";
    if (v4TraceTool == "polygon") return "Polilinea cerrada; doble clic para cerrar";
    if (v4TraceTool == "freehand") return "Contorno cerrado a mano alzada; soltar para cerrar";
    return v4TraceTool;
}

function v4ShowTraceController() {
    if (v4TraceMode == "") return;
    v4CloseTraceController();
    js = "var IJ=Packages.ij.IJ;var JFrame=Packages.javax.swing.JFrame;var JPanel=Packages.javax.swing.JPanel;var JButton=Packages.javax.swing.JButton;var JToggleButton=Packages.javax.swing.JToggleButton;var JCheckBox=Packages.javax.swing.JCheckBox;var JLabel=Packages.javax.swing.JLabel;var BorderLayout=Packages.java.awt.BorderLayout;var GridLayout=Packages.java.awt.GridLayout;var Window=Packages.java.awt.Window;var KeyboardFocusManager=Packages.java.awt.KeyboardFocusManager;var Color=Packages.java.awt.Color;var Font=Packages.java.awt.Font;var EmptyBorder=Packages.javax.swing.border.EmptyBorder;var Executer=Packages.ij.Executer;var Runnable=Packages.java.lang.Runnable;var Thread=Packages.java.lang.Thread;var ActionListener=Packages.java.awt.event.ActionListener;var ComponentAdapter=Packages.java.awt.event.ComponentAdapter;var WindowAdapter=Packages.java.awt.event.WindowAdapter;var Timer=Packages.javax.swing.Timer;var Prefs=Packages.ij.Prefs;";
    js = js + "var f=new JFrame('Cavity TEM - captura automatica');f.setDefaultCloseOperation(JFrame.DO_NOTHING_ON_CLOSE);var outer=new JPanel(new BorderLayout(6,6));outer.setBorder(new EmptyBorder(8,8,8,8));";
    js = js + "function makeRun(cmd){var body={run:function(){IJ.resetEscape();new Executer(cmd).run();}};if(typeof JavaAdapter!='undefined')return new JavaAdapter(Runnable,body);var R=Java.extend(Runnable);return new R(body);}";
    js = js + "function listener(cmd){var body={actionPerformed:function(e){var t=new Thread(makeRun(cmd));t.setDaemon(true);t.start();}};if(typeof JavaAdapter!='undefined')return new JavaAdapter(ActionListener,body);var A=Java.extend(ActionListener);return new A(body);}";
    js = js + "function button(p,label,cmd,bg,fg){var b=new JButton(label);b.addActionListener(listener(cmd));if(bg!=null)b.setBackground(bg);if(fg!=null)b.setForeground(fg);p.add(b);return b;}";
    js = js + "var info=new JPanel(new GridLayout(4,1,0,2));var mode=new JLabel('Modo: " + jsEscape(v4TraceModeLabel()) + "');mode.setFont(mode.getFont().deriveFont(Font.BOLD));var tool=new JLabel('Herramienta: " + jsEscape(v4TraceToolLabel()) + "');tool.setName('traceTool');var count=new JLabel('Registradas: " + v4TraceAdded + " | Borradas: " + v4TraceDeleted + "');count.setName('traceStatus');var hint=new JLabel('El ultimo objeto queda seleccionado para poder editarlo.');info.add(mode);info.add(tool);info.add(count);info.add(hint);var top=new JPanel(new BorderLayout(6,6));top.add(info,BorderLayout.CENTER);var winControls=new JPanel(new GridLayout(4,1,2,2));var pin=new JToggleButton('Chincheta (Fiji)',String(Prefs.get('cavity.v5.ui.trace.pinned','1'))!='0');var always=new JCheckBox('Siempre delante (Windows)',String(Prefs.get('cavity.v5.ui.alwaysOnTop','0'))=='1');always.setToolTipText('Modo opcional: delante de cualquier programa de Windows.');var dock=new JToggleButton('Acoplar',String(Prefs.get('cavity.v5.ui.dock','1'))!='0');dock.setToolTipText('Acoplamiento magnetico con panel avanzado e imagen; se separa arrastrando.');var aspect=new JCheckBox('Proporcion imagen',String(Prefs.get('cavity.v5.ui.image.aspect','0'))=='1');aspect.addActionListener(listener('Cavity V9: alternar proporcion de imagen'));winControls.add(pin);winControls.add(always);winControls.add(dock);winControls.add(aspect);top.add(winControls,BorderLayout.EAST);outer.add(top,BorderLayout.NORTH);f.getRootPane().putClientProperty('traceTool',tool);f.getRootPane().putClientProperty('traceStatus',count);f.getRootPane().putClientProperty('alwaysToggle',always);f.getRootPane().putClientProperty('aspectCheck',aspect);";
    if (v4TraceMode == "dislocation") {
        js = js + "var tools=new JPanel(new GridLayout(1,2,5,5));";
        js = js + "button(tools,'Polilinea','Cavity V9: usar polilinea',null,null);button(tools,'Mano alzada','Cavity V9: usar linea mano alzada',null,null);";
    } else {
        js = js + "var tools=new JPanel(new GridLayout(2,3,5,5));";
        js = js + "button(tools,'Ovalo','Cavity V9: usar ovalo de bucle',null,null);button(tools,'Elipse inclinada','Cavity V9: usar elipse inclinada de bucle',null,null);button(tools,'Polilinea cerrada','Cavity V9: usar poligono cerrado',null,null);button(tools,'Mano alzada cerrada','Cavity V9: usar contorno cerrado mano alzada',null,null);button(tools,'Ajustar seleccionada','Cavity V9: ajustar bucle seleccionado a elipse',new Color(238,238,238),Color.BLACK);button(tools,'Restaurar original','Cavity V9: restaurar bucle original',new Color(238,238,238),Color.BLACK);";
    }
    js = js + "outer.add(tools,BorderLayout.CENTER);var actions=new JPanel(new GridLayout(1,3,5,5));button(actions,'Borrar ultima','Cavity V9: borrar ultimo trazo',new Color(196,43,28),Color.WHITE);button(actions,'Borrar seleccionada','Cavity V9: borrar trazo seleccionado',new Color(238,238,238),Color.BLACK);button(actions,'Finalizar','Cavity V9: finalizar trazado automatico',new Color(43,109,224),Color.WHITE);outer.add(actions,BorderLayout.SOUTH);f.setContentPane(outer);";
    js = js + "function saveBounds(){try{var b=f.getBounds();Prefs.set('cavity.v5.ui.trace.x',b.x);Prefs.set('cavity.v5.ui.trace.y',b.y);Prefs.set('cavity.v5.ui.trace.w',b.width);Prefs.set('cavity.v5.ui.trace.h',b.height);}catch(ignore){}}function peers(){var out=[],ws=Window.getWindows();for(var j=0;j<ws.length;j++)try{var w=ws[j],t=String(w.getTitle());if(w!=f&&w.isVisible()&&(t.indexOf('Cavity TEM Studio 5.')==0||t=='Cavity TEM - captura automatica'))out.push(w);}catch(ignore){}try{var iw=IJ.getImage().getWindow();if(iw!=null&&iw!=f&&iw.isVisible()&&out.indexOf(iw)<0)out.push(iw);}catch(ignore){}return out;}var snapping=false;function snap(){if(snapping||!dock.isSelected())return;var ps=peers(),b=f.getBounds(),g=18,nx=b.x,ny=b.y,hit=false;for(var k=0;k<ps.length;k++){var q=ps[k].getBounds();if(Math.abs(b.x-(q.x+q.width))<=g){nx=q.x+q.width;hit=true;}else if(Math.abs((b.x+b.width)-q.x)<=g){nx=q.x-b.width;hit=true;}if(Math.abs(b.y-q.y)<=g){ny=q.y;hit=true;}else if(Math.abs((b.y+b.height)-q.y)<=g){ny=q.y-b.height;hit=true;}}if(hit&&(nx!=b.x||ny!=b.y)){snapping=true;f.setLocation(nx,ny);snapping=false;}}var cbody={componentMoved:function(e){snap();saveBounds();},componentResized:function(e){saveBounds();}};var cl;if(typeof JavaAdapter!='undefined')cl=new JavaAdapter(ComponentAdapter,cbody);else{var C=Java.extend(ComponentAdapter);cl=new C(cbody);}f.addComponentListener(cl);";
    js = js + "var pbody={actionPerformed:function(e){Prefs.set('cavity.v5.ui.trace.pinned',pin.isSelected()?'1':'0');}};var abody={actionPerformed:function(e){Prefs.set('cavity.v5.ui.alwaysOnTop',always.isSelected()?'1':'0');}};var dbody={actionPerformed:function(e){Prefs.set('cavity.v5.ui.dock',dock.isSelected()?'1':'0');if(dock.isSelected())snap();}};if(typeof JavaAdapter!='undefined'){pin.addActionListener(new JavaAdapter(ActionListener,pbody));always.addActionListener(new JavaAdapter(ActionListener,abody));dock.addActionListener(new JavaAdapter(ActionListener,dbody));}else{var PA=Java.extend(ActionListener);pin.addActionListener(new PA(pbody));always.addActionListener(new PA(abody));dock.addActionListener(new PA(dbody));}";
    js = js + "function fijiActive(){try{var a=KeyboardFocusManager.getCurrentKeyboardFocusManager().getActiveWindow();if(a==null)return false;if(a==f)return true;var cn=String(a.getClass().getName());if(cn.indexOf('ij.')==0)return true;var tt=String(a.getTitle());if(tt.indexOf('Cavity TEM')==0)return true;}catch(ignore){}return false;}var tbody={actionPerformed:function(e){try{var globalTop=String(Prefs.get('cavity.v5.ui.alwaysOnTop','0'))=='1';if(always.isSelected()!=globalTop)always.setSelected(globalTop);var wanted=globalTop||(pin.isSelected()&&fijiActive());if(f.isAlwaysOnTop()!=wanted)f.setAlwaysOnTop(wanted);}catch(ignore){}}};var tl;if(typeof JavaAdapter!='undefined')tl=new JavaAdapter(ActionListener,tbody);else{var TA=Java.extend(ActionListener);tl=new TA(tbody);}var timer=new Timer(300,tl);timer.start();";
    js = js + "var wb={windowClosing:function(e){var t=new Thread(makeRun('Cavity V9: finalizar trazado automatico'));t.setDaemon(true);t.start();},windowClosed:function(e){try{timer.stop();saveBounds();}catch(ignore){}}};if(typeof JavaAdapter!='undefined')f.addWindowListener(new JavaAdapter(WindowAdapter,wb));else{var W=Java.extend(WindowAdapter);f.addWindowListener(new W(wb));}f.pack();var sw=Math.round(Prefs.get('cavity.v5.ui.trace.w',-1)),sh=Math.round(Prefs.get('cavity.v5.ui.trace.h',-1)),sx=Math.round(Prefs.get('cavity.v5.ui.trace.x',-32000)),sy=Math.round(Prefs.get('cavity.v5.ui.trace.y',-32000));if(sw>=430&&sh>=180)f.setSize(sw,sh);if(sx>-30000&&sy>-30000)f.setLocation(sx,sy);else f.setLocationByPlatform(true);f.setVisible(true);f.toFront();snap();";
    eval("js", js);
}

function v4RefreshTraceController() {
    if (v4TraceMode == "") return;
    js = "var Frame=Packages.java.awt.Frame;var Prefs=Packages.ij.Prefs;var fs=Frame.getFrames();for(var i=0;i<fs.length;i++){try{if(String(fs[i].getTitle())=='Cavity TEM - captura automatica'){var r=fs[i].getRootPane();var t=r.getClientProperty('traceTool');var s=r.getClientProperty('traceStatus');var a=r.getClientProperty('aspectCheck');if(t!=null)t.setText('Herramienta: " + jsEscape(v4TraceToolLabel()) + "');if(s!=null)s.setText('Registradas: " + v4TraceAdded + " | Borradas: " + v4TraceDeleted + "');if(a!=null)a.setSelected(String(Prefs.get('cavity.v5.ui.image.aspect','0'))=='1');fs[i].repaint();}}catch(e){}}";
    eval("js",js);
}

function v4CloseTraceController() {
    js = "var Frame=Packages.java.awt.Frame;var fs=Frame.getFrames();for(var i=0;i<fs.length;i++){try{if(String(fs[i].getTitle())=='Cavity TEM - captura automatica')fs[i].dispose();}catch(e){}}";
    eval("js",js);
}

function v4DeleteLastTrace() {
    run("ROI Manager...");
    n=roiManager("count"); best=-1; bestOrder=-1;
    for(i=0;i<n;i++) {
        safeRoiSelect(i);
        if(propString("Trace_session_id","")!=v4TraceSessionId) continue;
        order=propNumber("Capture_order",-1);
        if(order>bestOrder){bestOrder=order;best=i;}
    }
    if(best<0){run("Select None");if(v4TraceMode!="")v4ApplyTraceTool();showStatus("No hay trazos de la serie activa para borrar.");return;}
    v4DeleteTraceAtIndex(best);
}

function v4DeleteSelectedTrace() {
    run("ROI Manager...");
    idx=roiManager("index");
    if(idx<0){if(v4TraceMode!="")v4DeleteLastTrace();else deleteSelectedManagedRoi();return;}
    safeRoiSelect(idx);
    type=propString("Object_type",currentRoiType());
    if(type!="dislocation" && type!="dislocation_loop") {
        if(v4TraceMode!="") showStatus("La ROI seleccionada no es una dislocacion ni un bucle. Use Borrar ultima para retirar el ultimo trazo de la serie.");
        else deleteSelectedManagedRoi();
        return;
    }
    v4DeleteTraceAtIndex(idx);
}

function v4DeleteTraceAtIndex(idx) {
    run("ROI Manager...");
    if(!safeRoiSelect(idx)) return;
    name=Roi.getName;
    Roi.copy;
    undoKind="delete";
    undoObjectId=propString("Object_id",name);
    undoDeletedName=name;
    undoAvailable=1;
    roiManager("delete");
    if(v4TraceMode!="") v4TraceDeleted++;
    showAllRois();
    run("Select None");
    if(v4TraceMode!="") {
        v4ApplyTraceTool();
        v4RefreshTraceController();
        showStatus("Borrado " + name + ". Continue trazando; no es necesario confirmar los objetos correctos.");
    } else {
        activateSelectTool();
        showStatus("Borrado " + name + ". Ctrl+Z permite restaurarlo una vez.");
    }
}

function v4FinishAutomaticTrace(silent) {
    previousMode=v4TraceMode;
    previousAdded=v4TraceAdded;
    previousDeleted=v4TraceDeleted;
    v4RemoveTraceListener();
    v4CloseTraceController();
    v4TraceMode="";
    v4TraceTool="";
    v4TraceSessionId="";
    v4TraceLastObjectId="";
    if(nImages()>0) activateSelectTool();
    if(!silent && previousMode!="") showMessage("Serie finalizada", "Registradas: " + previousAdded + "\nBorradas durante la serie: " + previousDeleted + "\n\nLas ROI conservadas permanecen en el ROI Manager y se guardan con la sesion del proyecto.");
    else if(!silent) showStatus("No hay una serie automatica activa.");
}

function v4AutoPrepareOnActivation() {
    if (!v4SynchronizeProjectContext()) {
        showStatus("Cavity TEM Studio v5.6.0 activo. No hay proyecto asociado; pulse el icono Studio para elegirlo.");
        return;
    }
    if (!v4OpenOrActivateRegisteredMaster(0)) {
        showStatus("Proyecto cargado, pero no se pudo abrir el montaje maestro registrado. Pulse el icono Studio para revisar.");
        return;
    }
    if (!v4ApplyScale()) {
        showStatus("Montaje abierto, pero existe un conflicto de escala. La medicion queda bloqueada hasta revisarlo.");
        return;
    }
    v4AttachImageContext();
    v4LoadSurfaceStateFromBridge();
    run("ROI Manager...");
    if (roiManager("count") > 0) {
        ensureObjectIds();
        restyleAllRois();
        showAllRois();
    }
    lockWindowSizeToCurrent(0);
    installInteractionListeners(0);
    showStatus("Proyecto y montaje maestro cargados automaticamente. Pulse el icono Studio para comenzar o continuar.");
}

function v55ProjectBridgeMarkerClear(root, actionText, showErrors) {
    root = normalizeStoredPath(root);
    if (endsWith(root, "/") || endsWith(root, "\\")) root = substring(root, 0, lengthOf(root)-1);
    if (root == "") {
        v55IntegrityLastError = "PROJECT_BRIDGE_RECOVERY_REQUIRED: raiz de proyecto no definida.";
        if (showErrors) showMessage("Recuperacion de proyecto requerida", "No se puede " + actionText + ".\n\n" + v55IntegrityLastError);
        return 0;
    }
    recoveryMarker = projectAwareJoinPath(projectAwareJoinPath(root, "fiji_bridge"), "project_bridge_recovery.json");
    if (File.exists(recoveryMarker)) {
        v55InvalidateIntegrityCache();
        v55IntegrityLastError = "PROJECT_BRIDGE_RECOVERY_REQUIRED: existe fiji_bridge/project_bridge_recovery.json.";
        if (showErrors) showMessage("Recuperacion de proyecto requerida", "No se puede " + actionText + ".\n\n" + v55IntegrityLastError + "\n\nVuelva a Studio y complete la recuperacion antes de continuar en Fiji.");
        return 0;
    }
    return 1;
}

function v55RequireProjectRootMatch(imageRoot, expectedRoot, actionText, showErrors) {
    imageRoot = normalizeStoredPath(imageRoot);
    expectedRoot = normalizeStoredPath(expectedRoot);
    if (imageRoot != "" && !v55ProjectBridgeMarkerClear(imageRoot, actionText, showErrors)) return 0;
    if (expectedRoot != "" && !v55ProjectBridgeMarkerClear(expectedRoot, actionText, showErrors)) return 0;
    if (imageRoot != "" && expectedRoot != "") {
        imageCanonicalRoot = toLowerCase(v55CanonicalPathJava(imageRoot));
        expectedCanonicalRoot = toLowerCase(v55CanonicalPathJava(expectedRoot));
        if (imageCanonicalRoot == "" || expectedCanonicalRoot == "" || imageCanonicalRoot != expectedCanonicalRoot) {
            v55IntegrityLastError = "CROSS_PROJECT_IMAGE_CONTEXT: la imagen activa pertenece a otro proyecto.";
            if (showErrors) showMessage("Contexto de proyecto incompatible", "No se puede " + actionText + ".\n\n" + v55IntegrityLastError + "\n\nProyecto de la imagen: " + imageRoot + "\nProyecto cargado: " + expectedRoot + "\n\nCargue el proyecto de la imagen antes de continuar.");
            return 0;
        }
    }
    return 1;
}

function v55RequireActiveImageProjectContext(expectedRoot, actionText, showErrors) {
    return v55RequireProjectRootMatch(v4FindProjectRootFromCurrentImage(), expectedRoot, actionText, showErrors);
}

function v55PersistActiveRoiSet(actionText) {
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, actionText, 1)) return 0;
    activeRoiSetPath = projectAwareJoinPath(v4BridgeDir, "active_roi_set.txt");
    File.saveString(v4ActiveRoiSetId + "\n", activeRoiSetPath);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, actionText, 1)) return 0;
    return 1;
}

function v4SynchronizeProjectContext() {
    // Prefer the project physically containing the active image. This prevents
    // an old Fiji preference from binding a newly opened master to the wrong
    // project. If the image is not inside a project, use the Studio preference.
    imageRoot = v4FindProjectRootFromCurrentImage();
    if (imageRoot != "") {
        if (v4ProjectLoaded && imageRoot == v4ProjectDir) {
            if (v55ProjectBridgeMarkerClear(imageRoot, "sincronizar el proyecto de la imagen", 1)) return 1;
            v4ProjectLoaded = 0;
            projectAwareActive = 0;
            projectConfigured = 0;
            return 0;
        }
        return v4LoadProject(imageRoot);
    }
    rememberedRoot = call("ij.Prefs.get", "cavity.v5.project.dir", "");
    if (rememberedRoot == "") rememberedRoot = call("ij.Prefs.get", "cavity.v4.project.dir", "");
    rememberedRoot = normalizeStoredPath(rememberedRoot);
    if (rememberedRoot != "" && rememberedRoot != v4ProjectDir) {
        rememberedJson = projectAwareJoinPath(rememberedRoot, "project.json");
        rememberedBridge = projectAwareJoinPath(projectAwareJoinPath(rememberedRoot, "fiji_bridge"), "current_bridge.json");
        if (File.exists(rememberedJson) && File.exists(rememberedBridge)) return v4LoadProject(rememberedRoot);
    }
    if (v4ProjectLoaded && v4ProjectDir != "") {
        if (v55ProjectBridgeMarkerClear(v4ProjectDir, "sincronizar el proyecto", 1)) return 1;
        v4ProjectLoaded = 0;
        projectAwareActive = 0;
        projectConfigured = 0;
        return 0;
    }
    return v4TryAutoLoadRememberedProject();
}

function v4FindProjectRootFromCurrentImage() {
    resultRoot = "";
    if (nImages() <= 0) return "" + resultRoot;
    imageDirNow = getInfo("image.directory");
    if (imageDirNow == "") return "" + resultRoot;
    currentDir = normalizeStoredPath(imageDirNow);
    if (endsWith(currentDir, "/") || endsWith(currentDir, "\\")) currentDir = substring(currentDir, 0, lengthOf(currentDir)-1);
    for (depth=0; depth<10; depth++) {
        candidateJson = projectAwareJoinPath(currentDir, "project.json");
        candidateBridge = projectAwareJoinPath(projectAwareJoinPath(currentDir, "fiji_bridge"), "current_bridge.json");
        candidateRecovery = projectAwareJoinPath(projectAwareJoinPath(currentDir, "fiji_bridge"), "project_bridge_recovery.json");
        if (File.exists(candidateRecovery)) {
            resultRoot = currentDir;
            return "" + resultRoot;
        }
        if (File.exists(candidateJson) && File.exists(candidateBridge)) {
            resultRoot = currentDir;
            return "" + resultRoot;
        }
        parentDir = File.getParent(currentDir);
        if (parentDir == "" || parentDir == currentDir) break;
        currentDir = normalizeStoredPath(parentDir);
        if (endsWith(currentDir, "/") || endsWith(currentDir, "\\")) currentDir = substring(currentDir, 0, lengthOf(currentDir)-1);
    }
    return "" + resultRoot;
}

function v4OpenOrActivateRegisteredMaster(showErrors) {
    if (!v4ProjectLoaded) return 0;
    if (!v55VerifyQuantitativeIntegrity("abrir el maestro", 0, showErrors)) return 0;
    if (v4MasterImage == "" || !File.exists(v4MasterImage)) {
        if (showErrors) showMessage("Montaje no disponible", "No existe el OME-TIFF maestro registrado:\n" + v4MasterImage + "\n\nVuelva a Studio y registre el montaje maestro.");
        return 0;
    }
    if (!v4OpenImageByExactPath(v4MasterImage)) {
        if (showErrors) showMessage("No se pudo abrir", "Fiji no pudo abrir el montaje maestro:\n" + v4MasterImage);
        return 0;
    }
    if (!v55ActiveImageMatchesCurrentMaster(showErrors)) return 0;
    projectAwareCurrentAnalysisImagePath = v4MasterImage;
    projectAwareCurrentAnalysisImageRole = v4MasterRole;
    projectAwareCurrentAnalysisImageName = getTitle();
    return 1;
}

function v4CurrentImageCanonicalPath() {
    currentPathText = "";
    if (nImages() <= 0) return "" + currentPathText;
    currentDirText = normalizeStoredPath(getInfo("image.directory"));
    if (currentDirText == "") return "" + currentPathText;
    currentFileText = getInfo("image.filename");
    if (currentFileText == "") currentFileText = getTitle();
    currentPathText = normalizeStoredPath(projectAwareJoinPath(currentDirText, currentFileText));
    return "" + currentPathText;
}

function v4OpenImageByExactPath(path) {
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "abrir una imagen exacta", 1)) return 0;
    wantedPathText = normalizeStoredPath(path);
    if (wantedPathText == "" || !File.exists(wantedPathText)) return 0;
    openTitles = getList("image.titles");
    for (openIndex=0; openIndex<openTitles.length; openIndex++) {
        selectWindow(openTitles[openIndex]);
        if (v4CurrentImageCanonicalPath() == wantedPathText) return v55ProjectBridgeMarkerClear(v4ProjectDir, "activar una imagen exacta", 1);
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "abrir una imagen exacta", 1)) return 0;
    open(wantedPathText);
    if (nImages() <= 0) return 0;
    if (v4CurrentImageCanonicalPath() != wantedPathText) return 0;
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de abrir una imagen exacta", 1)) return 0;
    return 1;
}

function v4PrepareImageForMeasurement(showErrors) {
    if (!lightEnsureCurrentImage()) return 0;
    if (!updateScaleMaybe() || !lightScaleConfirmed) {
        if (showErrors) showMessage("Escala no confirmada", "Confirma la escala de Bio-Formats, introducela en nm/px o calibra con una linea antes de medir.");
        return 0;
    }
    usePanelsAsMask = 0; v4ProjectLoaded = 0; projectConfigured = 1;
    return 1;
}


function v4TryAutoLoadRememberedProject() {
    if (v4ProjectLoaded && v4ProjectDir != "") return 1;
    rememberedRoot = call("ij.Prefs.get", "cavity.v5.project.dir", "");
    if (rememberedRoot == "") rememberedRoot = call("ij.Prefs.get", "cavity.v4.project.dir", "");
    rememberedRoot = normalizeStoredPath(rememberedRoot);
    if (rememberedRoot == "") return 0;
    rememberedJson = projectAwareJoinPath(rememberedRoot, "project.json");
    rememberedBridge = projectAwareJoinPath(projectAwareJoinPath(rememberedRoot, "fiji_bridge"), "current_bridge.json");
    if (!File.exists(rememberedJson) || !File.exists(rememberedBridge)) return 0;
    return v4LoadProject(rememberedRoot);
}

function v4OpenProject() {
    remembered = call("ij.Prefs.get", "cavity.v5.project.dir", "");
    if (remembered == "") remembered = call("ij.Prefs.get", "cavity.v4.project.dir", "");
    if (remembered != "" && File.exists(projectAwareJoinPath(remembered, "project.json"))) {
        Dialog.create("Abrir proyecto Cavity TEM Studio");
        Dialog.addMessage("Proyecto recordado:\n" + remembered);
        Dialog.addChoice("Accion:", newArray("Abrir proyecto recordado", "Elegir otra carpeta"), "Abrir proyecto recordado");
        Dialog.show();
        pick = Dialog.getChoice();
        if (pick == "Abrir proyecto recordado") root = remembered;
        else root = getDirectory("Elige la carpeta raiz del proyecto Cavity TEM Studio");
    } else root = getDirectory("Elige la carpeta raiz del proyecto Cavity TEM Studio");
    if (root == "") return;
    if (!v4LoadProject(root)) return;

    openChoice = "No abrir imagen";
    canOpen = v4MasterImage != "" && File.exists(v4MasterImage);
    if (nImages() > 0) {
        imageChoices = newArray("Usar imagen abierta", "Abrir montaje maestro", "No abrir imagen");
        openChoice = "Usar imagen abierta";
        if (canOpen && v4CurrentImageCanonicalPath() != normalizeStoredPath(v4MasterImage)) openChoice = "Abrir montaje maestro";
    } else {
        imageChoices = newArray("Abrir montaje maestro", "No abrir imagen");
        if (canOpen) openChoice = "Abrir montaje maestro";
    }
    applyCalibrationDefault = 0;
    if (!isNaN(v4PixelWidth)) {
        if (v4PixelWidth > 0) applyCalibrationDefault = 1;
    }
    loadSessionDefault = 0;
    sessionPathText = v4SessionPath();
    if (sessionPathText != "") {
        if (File.exists(sessionPathText)) loadSessionDefault = 1;
    }

    Dialog.create("Proyecto Cavity TEM 5 preparado");
    Dialog.addMessage(v4ProjectSummary());
    Dialog.addChoice("Imagen:", imageChoices, openChoice);
    Dialog.addCheckbox("Aplicar calibracion activa", applyCalibrationDefault);
    Dialog.addCheckbox("Cargar la sesion current publicada si existe", loadSessionDefault);
    Dialog.show();
    imageChoice = Dialog.getChoice();
    applyScale = Dialog.getCheckbox();
    loadSession = Dialog.getCheckbox();

    if (imageChoice == "Usar imagen abierta" && nImages() > 0) {
        currentName = getTitle();
        projectAwareCurrentAnalysisImageName = currentName;
        projectAwareCurrentAnalysisImageRole = "ANALYSIS_IMAGE";
        if (v4MasterImage != "" && v4CurrentImageCanonicalPath() == normalizeStoredPath(v4MasterImage)) {
            projectAwareCurrentAnalysisImagePath = v4MasterImage;
            projectAwareCurrentAnalysisImageRole = v4MasterRole;
        }
    }
    if (imageChoice == "Abrir montaje maestro") {
        if (canOpen) {
            if (!v4OpenOrActivateRegisteredMaster(1)) {
                showMessage("Montaje no disponible", "Fiji no pudo abrir la ruta exacta del montaje registrado:\n" + v4MasterImage);
                return;
            }
        } else showMessage("Montaje no disponible", "No existe el montaje registrado:\n" + v4MasterImage);
    }
    if (nImages() > 0 && applyScale) { if (!v4ApplyScale()) return; }
    if (loadSession) v4LoadSession();
    if (nImages() > 0) v4AttachImageContext();
    v4LoadSurfaceStateFromBridge();
    showStatus("Proyecto Cavity TEM 5 cargado: " + v4ProjectName);
}

function v4ReloadProject() {
    if (v4ProjectDir == "") { v4OpenProject(); return; }
    if (v4LoadProject(v4ProjectDir)) {
        if (nImages() > 0 && v4PixelWidth > 0) { if (!v4ApplyScale()) return; }
        v4LoadSurfaceStateFromBridge();
        showStatus("Proyecto Cavity TEM 5 recargado.");
    }
}

function v4LoadProject(root) {
    root = normalizeStoredPath(root);
    if (endsWith(root, "/") || endsWith(root, "\\")) root = substring(root, 0, lengthOf(root)-1);
    if (v4ProjectLoaded && v4ProjectDir == root) {
        v4ProjectLoaded = 0;
        projectAwareActive = 0;
        projectConfigured = 0;
    }
    if (!v55ProjectBridgeMarkerClear(root, "cargar el proyecto", 1)) return 0;
    projectJsonPath = projectAwareJoinPath(root, "project.json");
    bridge = projectAwareJoinPath(root, "fiji_bridge");
    bridgePointer = projectAwareJoinPath(bridge, "current_bridge.json");
    if (!File.exists(projectJsonPath) || !File.exists(bridgePointer)) {
        showMessage("Proyecto no valido", "No encuentro project.json o el puntero fiji_bridge/current_bridge.json en:\n" + root + "\n\nAbra antes la carpeta con Cavity TEM Studio 5.6.0 para publicar un puente inmutable.");
        return 0;
    }
    bridgePointerText = File.openAsString(bridgePointer);
    bridgeGeneration = projectAwareReadFieldFromJsonText(bridgePointerText, "generation_id");
    pointerProjectId = projectAwareReadFieldFromJsonText(bridgePointerText, "project_id");
    if (bridgeGeneration == "" || indexOf(bridgeGeneration, "..") >= 0 || indexOf(bridgeGeneration, "/") >= 0 || indexOf(bridgeGeneration, "\\") >= 0) {
        showMessage("Puente Fiji no valido", "current_bridge.json no contiene un generation_id seguro. Vuelva a Studio y regenere el puente.");
        return 0;
    }
    bridgeStatic = projectAwareJoinPath(projectAwareJoinPath(bridge, "generations"), bridgeGeneration);
    fields = projectAwareJoinPath(bridgeStatic, "project_fields.csv");
    generationManifest = projectAwareJoinPath(bridgeStatic, "bridge_generation_manifest.json");
    if (!File.exists(fields) || !File.exists(generationManifest)) {
        showMessage("Puente Fiji incompleto", "La generacion seleccionada por current_bridge.json no esta completa:\n" + bridgeStatic);
        return 0;
    }
    // A global ROI Manager can otherwise carry measurements from project A
    // into project B. Save with the old context and clear before switching.
    switchingProject = 0;
    if (v4ProjectLoaded && v4ProjectDir != "" && v4ProjectDir != root) switchingProject = 1;
    if (switchingProject) {
        run("ROI Manager...");
        previousRoiCount = roiManager("count");
        if (previousRoiCount > 0) {
            if (!getBoolean("El ROI Manager contiene " + previousRoiCount + " ROI del proyecto anterior.\n\nPara impedir una atribucion incorrecta, Studio debe guardar esa sesion y limpiar el ROI Manager.", "Guardar y cambiar", "Cancelar")) return 0;
            switchTargetImageId = -1;
            if (nImages() > 0) switchTargetImageId = getImageID();
            if (!v4OpenOrActivateRegisteredMaster(1)) return 0;
            v4ProjectSwitchInProgress = 1;
            previousSessionSaved = v4SaveSession();
            v4ProjectSwitchInProgress = 0;
            if (switchTargetImageId > 0) selectImage(switchTargetImageId);
            if (!previousSessionSaved) return 0;
            roiManager("reset");
        }
    }
    // From this point onward globals describe a candidate project. Any later
    // failure must leave the context inactive so synchronization reloads it.
    v4ProjectLoaded = 0;
    projectAwareActive = 0;
    projectConfigured = 0;
    v4ProjectDir = root;
    v4BridgeDir = bridge;
    v4BridgeStaticDir = bridgeStatic;
    v4BridgePointerJson = bridgePointer;
    v4BridgeGenerationId = bridgeGeneration;
    v4ProjectFieldsCsv = fields;
    v4ProjectFieldsText = File.openAsString(v4ProjectFieldsCsv);
    v4RoiSetsCsv = projectAwareJoinPath(v4BridgeStaticDir, "roi_sets.csv");
    v55InvalidateIntegrityCache();
    // The integrated v8.3 core also reads project-aware fields. Point both
    // layers at the same bridge instead of leaving the legacy global empty.
    projectAwareProjectFieldsCsv = v4ProjectFieldsCsv;
    v4ProjectId = v4Field("project_id");
    if (v4Field("bridge_generation_id") != v4BridgeGenerationId || pointerProjectId != v4ProjectId) {
        showMessage("Puente Fiji incoherente", "project_fields.csv, current_bridge.json y project_id no pertenecen a la misma generacion.");
        return 0;
    }
    v4ProjectName = v4Field("project_name");
    v4StudyId = v4Field("study_id");
    v4StudyName = v4Field("study_name");
    v4SampleId = v4Field("sample_id");
    v4Material = v4Field("material");
    v4Condition = v4Field("condition");
    v4SpecimenId = v4Field("specimen_id");
    v4SpecimenLabel = v4Field("specimen_label");
    v4AcquisitionId = v4Field("acquisition_id");
    v4AcquisitionLabel = v4Field("acquisition_label");
    v4MasterRole = v4Field("master_role");
    if (v4MasterRole == "") v4MasterRole = "MASTER_ANALYTICAL";
    masterStored = v4Field("master_image");
    v4MasterImage = v4ResolvePath(masterStored);
    v4MasterRevisionId = v4Field("master_revision_id");
    v4CurrentMontagePointerPath = v4ResolvePath(v4Field("current_montage_pointer"));
    v4MasterRevisionManifestPath = v4ResolvePath(v4Field("master_revision_manifest"));
    v4MasterNativePlanPath = v4ResolvePath(v4Field("master_native_plan"));
    v4MasterFidelityReportPath = v4ResolvePath(v4Field("master_fidelity_report"));
    v4OwnershipImage = v4ResolvePath(v4Field("master_ownership"));
    v4CurrentMontagePointerSha256 = toLowerCase(v4Field("current_montage_pointer_sha256"));
    v4MasterRevisionManifestSha256 = toLowerCase(v4Field("master_revision_manifest_sha256"));
    v4MasterNativePlanSha256 = toLowerCase(v4Field("master_native_plan_sha256"));
    v4MasterFidelitySha256 = toLowerCase(v4Field("master_fidelity_sha256"));
    v4MasterSha256 = toLowerCase(v4Field("master_sha256"));
    v4MasterOwnershipSha256 = toLowerCase(v4Field("master_ownership_sha256"));
    v4RevisionBindingReady = 0;
    v4RevisionBindingError = "";
    if (!v4ValidateBridgeRevisionBinding(1)) return 0;
    v4CalibrationId = v4Field("active_calibration_id");
    v4ScaleReconciliationStatus = v4Field("scale_reconciliation_status");
    if (v4ScaleReconciliationStatus == "") v4ScaleReconciliationStatus = "NOT_ANALYZED";
    scaleAllowedText = toLowerCase(v4Field("scale_measurement_allowed"));
    scaleRevisionMatchText = toLowerCase(v4Field("scale_revision_match"));
    v4ScaleMeasurementAllowed = 0;
    if ((scaleAllowedText == "1" || scaleAllowedText == "true" || scaleAllowedText == "yes" || scaleAllowedText == "si") && (scaleRevisionMatchText == "1" || scaleRevisionMatchText == "true" || scaleRevisionMatchText == "yes" || scaleRevisionMatchText == "si")) v4ScaleMeasurementAllowed = 1;
    v4PixelWidth = parseFloat(v4Field("pixel_width"));
    v4PixelHeight = parseFloat(v4Field("pixel_height"));
    if (isNaN(v4PixelHeight) || v4PixelHeight <= 0) v4PixelHeight = v4PixelWidth;
    v4PixelUnit = v4Field("pixel_unit");
    if (v4PixelUnit == "") v4PixelUnit = "nm";
    v4SurfaceId = v4Field("active_surface_id");
    if (v4SurfaceId == "") v4SurfaceId = "SURF_001";
    // Source range is display-only. The semicolon-separated explicit list is
    // authoritative and preserves intentional gaps such as 0004;0007;0012.
    sourceFirst = v4Field("source_first");
    sourceLast = v4Field("source_last");
    sourceImageList = v4Field("source_sequences");
    projectAwarePanelCount = v4Field("panel_count");
    v4PanelsCsv = v4ResolvePath(v4Field("panels_csv"));
    if (v4PanelsCsv == "") v4PanelsCsv = projectAwareJoinPath(v4BridgeStaticDir, "panels.csv");
    v4PanelGeometryJson = v4ResolvePath(v4Field("panel_geometry_json"));
    if (v4PanelGeometryJson == "") v4PanelGeometryJson = projectAwareJoinPath(v4BridgeStaticDir, "panel_geometry.json");
    v4OwnershipImage = v4ResolvePath(v4Field("panel_ownership_image"));
    v4OwnershipLegendCsv = v4ResolvePath(v4Field("panel_ownership_legend_csv"));
    if (v4OwnershipLegendCsv == "") v4OwnershipLegendCsv = projectAwareJoinPath(v4BridgeStaticDir, "panel_ownership_legend.csv");
    ownershipCertifiedText = toLowerCase(v4Field("panel_ownership_certified"));
    v4OwnershipCertified = 0;
    if (ownershipCertifiedText == "1" || ownershipCertifiedText == "true" || ownershipCertifiedText == "yes" || ownershipCertifiedText == "si") v4OwnershipCertified = 1;
    v4PanelOverlapPolicy = v4Field("panel_overlap_policy");
    if (v4PanelOverlapPolicy == "") v4PanelOverlapPolicy = "unknown";
    v4PanelGeometryStatus = v4Field("panel_geometry_status");
    if (v4PanelGeometryStatus == "") v4PanelGeometryStatus = "UNAVAILABLE";
    panelReadyText = toLowerCase(v4Field("panel_quantitative_ownership_ready"));
    v4PanelQuantitativeReady = 0;
    if (panelReadyText == "1" || panelReadyText == "true" || panelReadyText == "yes" || panelReadyText == "si") v4PanelQuantitativeReady = 1;
    v4ActiveRoiSetId = v4Field("active_roi_set_id");
    if (v4ActiveRoiSetId == "") v4ActiveRoiSetId = "CAVITIES";
    roiSetsStored = v4Field("roi_sets_csv");
    if (roiSetsStored != "") v4RoiSetsCsv = v4ResolvePath(roiSetsStored);
    if (v4ProjectId == "" || v4ProjectName == "") {
        showMessage("Puente Fiji incompleto", "No se pudieron leer project_id y project_name de:\n" + v4ProjectFieldsCsv + "\n\nVuelva a Cavity TEM Studio, abra este proyecto y pulse Actualizar antes de abrir Fiji.");
        return 0;
    }
    if (!v55ProjectBridgeMarkerClear(root, "terminar de cargar el proyecto", 1)) return 0;
    v4ReadRoiSet(v4ActiveRoiSetId);
    call("ij.Prefs.set", "cavity.v5.project.dir", v4ProjectDir);
    call("ij.Prefs.set", "cavity.v4.project.dir", v4ProjectDir);

    // Mirror v4 context into the mature v8.3 globals for compatible tools.
    projectAwareProjectDir = v4ProjectDir;
    projectAwareSessionsDir = projectAwareJoinPath(v4ProjectDir, "sessions");
    projectAwareDerivedDir = projectAwareJoinPath(v4ProjectDir, "analysis_images");
    projectAwareViewsDir = projectAwareJoinPath(v4ProjectDir, "analysis_images");
    projectAwareProjectUid = v4ProjectId;
    projectAwareMasterTif = v4MasterImage;
    projectAwareMontageBuildLogCsv = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "sessions"), "montage_build_log.csv");
    projectAwareLayoutCheckCsv = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "layout"), "montage_layout_check.csv");
    projectAwarePixelWidth = "" + v4PixelWidth;
    projectAwarePixelHeight = "" + v4PixelHeight;
    projectAwarePixelUnit = v4PixelUnit;
    projectAwareResultsCsv = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "exports"), "objects_v4.csv");
    sampleName = v4Material;
    experimentalCondition = v4Condition;
    montageId = v4ProjectId;
    operatorName = v4Field("operator");
    if (!v55ProjectBridgeMarkerClear(root, "publicar el contexto cargado", 1)) return 0;
    makeDirIfMissing(projectAwareSessionsDir);
    makeDirIfMissing(projectAwareJoinPath(v4ProjectDir, "exports"));
    makeDirIfMissing(projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "exports"), "runs"));
    if (!v55ProjectBridgeMarkerClear(root, "publicar el contexto cargado", 1)) return 0;
    v4ProjectLoaded = 1;
    projectAwareActive = 1;
    projectConfigured = 1;
    return 1;
}

function v4Field(name) {
    // IJM can infer a numeric return type when a user-defined function call is
    // returned directly. Assign and coerce explicitly so text fields such as
    // project_id, names and paths remain strings.
    if (v4ProjectFieldsText == "") return "";
    fieldText = projectAwareReadFieldFromCsvText(v4ProjectFieldsText, name);
    return "" + fieldText;
}

function v4IsSha256(value) {
    canonicalHash = toLowerCase("" + value);
    if (lengthOf(canonicalHash) != 64) return 0;
    return matches(canonicalHash, "^[0-9a-f]{64}$");
}

// -------------------------------------------------------------------------
// Fase 1 R2 - live integrity verification for quantitative Fiji operations.
//
// The Java helper reads every byte through MessageDigest. It intentionally
// does not call a command shell and does not trust a hash merely because it
// has 64 hexadecimal characters. The short cache below is bounded to five
// seconds and is invalidated by the canonical path, size or modification time
// of every bridge/revision file. A full verification also compares a before
// and after fingerprint so a concurrent publication fails closed.
//
// Runtime evidence: NO PROBADO EN FIJI REAL. Static Python tests only verify
// the call graph and this Java/ImageJ contract; a real Fiji acceptance run is
// still mandatory before scientific use.
// -------------------------------------------------------------------------

function v55InvalidateIntegrityCache() {
    v55IntegrityCacheFingerprint = "";
    v55IntegrityCacheProjectId = "";
    v55IntegrityCacheUntilMs = 0;
    v55IntegrityLastEvidence = "";
    v55IntegrityLastError = "";
}

function v55ReadFileEvidenceJava(path) {
    v55FileCanonicalPath = "";
    v55FileSizeBytes = -1;
    v55FileModifiedMs = -1;
    v55FileSha256 = "";
    if (path == "") return 0;
    js = "var File=Packages.java.io.File,FIS=Packages.java.io.FileInputStream,MD=Packages.java.security.MessageDigest,Reflect=Packages.java.lang.reflect.Array,ByteType=Packages.java.lang.Byte.TYPE,Integer=Packages.java.lang.Integer,StringBuilder=Packages.java.lang.StringBuilder;var input=null,OUT='ERROR|unknown';";
    js = js + "function clean(v){return String(v).replace(/[\\r\\n|]/g,' ');}function hex(bytes){var sb=new StringBuilder();for(var i=0;i<bytes.length;i++){var value=Number(bytes[i])&255;if(value<16)sb.append('0');sb.append(Integer.toHexString(value));}return String(sb.toString());}";
    js = js + "try{var file=new File('" + jsEscape(path) + "').getCanonicalFile();if(!file.isFile())throw new Error('not_a_file');var digest=MD.getInstance('SHA-256');input=new FIS(file);var buffer=Reflect.newInstance(ByteType,1048576),count;while((count=input.read(buffer))!=-1){if(count>0)digest.update(buffer,0,count);}OUT='OK|'+clean(file.getCanonicalPath())+'|'+String(file.length())+'|'+String(file.lastModified())+'|'+hex(digest.digest());}catch(ex){OUT='ERROR|'+clean(ex);}finally{try{if(input!=null)input.close();}catch(ignore){}}String(OUT);";
    result = "" + eval("js", js);
    parts = split(result, "|");
    if (parts.length < 5 || parts[0] != "OK") {
        v55IntegrityLastError = "No se pudo calcular SHA-256 real: " + path + " (" + result + ")";
        return 0;
    }
    v55FileCanonicalPath = normalizeStoredPath(parts[1]);
    v55FileSizeBytes = parseFloat(parts[2]);
    v55FileModifiedMs = parseFloat(parts[3]);
    v55FileSha256 = toLowerCase(parts[4]);
    if (!v4IsSha256(v55FileSha256)) {
        v55IntegrityLastError = "SHA-256 Java no valido para: " + path;
        return 0;
    }
    return 1;
}

function v55Sha256FileJava(path) {
    if (!v55ReadFileEvidenceJava(path)) return "";
    return "" + v55FileSha256;
}

function v55CanonicalPathJava(path) {
    if (path == "") return "";
    js = "var File=Packages.java.io.File,OUT='';try{OUT=String(new File('" + jsEscape(path) + "').getCanonicalPath());}catch(ex){OUT='';}OUT;";
    canonicalResult = "" + eval("js", js);
    canonicalResult = normalizeStoredPath(canonicalResult);
    return "" + canonicalResult;
}

function v55CurrentIntegrityFingerprintJava() {
    revisionDir = projectAwareJoinPath(projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "derived"), "montage_revisions"), v4MasterRevisionId);
    recoveryMarker = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "fiji_bridge"), "project_bridge_recovery.json");
    js = "var File=Packages.java.io.File,MD=Packages.java.security.MessageDigest,Integer=Packages.java.lang.Integer,StringBuilder=Packages.java.lang.StringBuilder,Text=Packages.java.lang.String;var OUT='ERROR|unknown';";
    js = js + "function clean(v){return String(v).replace(/[\\r\\n|]/g,' ');}function hex(bytes){var sb=new StringBuilder();for(var i=0;i<bytes.length;i++){var value=Number(bytes[i])&255;if(value<16)sb.append('0');sb.append(Integer.toHexString(value));}return String(sb.toString());}function add(items,file){var f=file.getCanonicalFile();items.push(clean(f.getCanonicalPath())+';'+(f.exists()?'1':'0')+';'+(f.isFile()?String(f.length()):'-1')+';'+String(f.lastModified()));}function addDir(items,dir){add(items,dir);var files=dir.listFiles();if(files==null)return;var names=[];for(var i=0;i<files.length;i++)names.push(files[i]);names.sort(function(a,b){return String(a.getName()).localeCompare(String(b.getName()));});for(var j=0;j<names.length;j++)add(items,names[j]);}";
    js = js + "try{var items=[];add(items,new File('" + jsEscape(projectAwareJoinPath(v4ProjectDir, "project.json")) + "'));add(items,new File('" + jsEscape(v4BridgePointerJson) + "'));add(items,new File('" + jsEscape(v4CurrentMontagePointerPath) + "'));add(items,new File('" + jsEscape(recoveryMarker) + "'));addDir(items,new File('" + jsEscape(v4BridgeStaticDir) + "'));addDir(items,new File('" + jsEscape(revisionDir) + "'));items.sort();var digest=MD.getInstance('SHA-256');OUT='OK|'+hex(digest.digest(new Text(items.join('\\n')).getBytes('UTF-8')));}catch(ex){OUT='ERROR|'+clean(ex);}String(OUT);";
    result = "" + eval("js", js);
    parts = split(result, "|");
    if (parts.length < 2 || parts[0] != "OK" || !v4IsSha256(parts[1])) {
        v55IntegrityLastError = "No se pudo construir la huella viva de integridad: " + result;
        return "";
    }
    return "" + toLowerCase(parts[1]);
}

function v55ActiveImageMatchesCurrentMaster(showErrors) {
    if (nImages() <= 0) {
        v55IntegrityLastError = "No hay una imagen activa para la operacion cuantitativa.";
        if (showErrors) showMessage("Integridad cuantitativa bloqueada", v55IntegrityLastError);
        return 0;
    }
    if (startsWith(getTitle(), "VIEW_ONLY__")) {
        v55IntegrityLastError = "La imagen activa es VIEW_ONLY y no puede gobernar una operacion cuantitativa.";
        if (showErrors) showMessage("Integridad cuantitativa bloqueada", v55IntegrityLastError);
        return 0;
    }
    activePath = v55CanonicalPathJava(v4CurrentImageCanonicalPath());
    masterPath = v55CanonicalPathJava(v4MasterImage);
    if (activePath == "" || masterPath == "" || toLowerCase(activePath) != toLowerCase(masterPath)) {
        v55IntegrityLastError = "La imagen activa no es el maestro vigente.\n\nMaestro: " + masterPath + "\nImagen activa: " + activePath;
        if (showErrors) showMessage("Integridad cuantitativa bloqueada", v55IntegrityLastError);
        return 0;
    }
    dirtyState = "" + eval("js", "var imp=Packages.ij.IJ.getImage();String(imp!=null&&imp.changes?'DIRTY':'CLEAN');");
    if (dirtyState != "CLEAN") {
        v55IntegrityLastError = "La imagen maestra activa contiene cambios no guardados en memoria. Abra de nuevo el maestro certificado.";
        if (showErrors) showMessage("Integridad cuantitativa bloqueada", v55IntegrityLastError);
        return 0;
    }
    return 1;
}

function v55RunFullIntegrityVerificationJava() {
    projectJsonPath = projectAwareJoinPath(v4ProjectDir, "project.json");
    recoveryMarker = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "fiji_bridge"), "project_bridge_recovery.json");
    js = "var File=Packages.java.io.File,FIS=Packages.java.io.FileInputStream,Files=Packages.java.nio.file.Files,MD=Packages.java.security.MessageDigest,Reflect=Packages.java.lang.reflect.Array,ByteType=Packages.java.lang.Byte.TYPE,Integer=Packages.java.lang.Integer,StringBuilder=Packages.java.lang.StringBuilder,Text=Packages.java.lang.String;var input=null,lastLabel='integrity',OUT='ERROR|integrity|unknown';";
    js = js + "function clean(v){return String(v).replace(/[\\r\\n|]/g,' ');}function fail(label,message){lastLabel=String(label);throw new Error(String(message));}function hex(bytes){var sb=new StringBuilder();for(var i=0;i<bytes.length;i++){var value=Number(bytes[i])&255;if(value<16)sb.append('0');sb.append(Integer.toHexString(value));}return String(sb.toString());}function shaBytes(bytes){return hex(MD.getInstance('SHA-256').digest(bytes));}function shaText(text){return shaBytes(new Text(String(text)).getBytes('UTF-8'));}";
    js = js + "function shaFile(file,label){var stream=null;try{if(!file.isFile())fail(label,'archivo ausente');var digest=MD.getInstance('SHA-256');stream=new FIS(file);var buffer=Reflect.newInstance(ByteType,1048576),count;while((count=stream.read(buffer))!=-1){if(count>0)digest.update(buffer,0,count);}return hex(digest.digest());}finally{try{if(stream!=null)stream.close();}catch(ignore){}}}function readText(file,label){if(!file.isFile())fail(label,'archivo ausente');var value=String(new Text(Files.readAllBytes(file.toPath()),'UTF-8'));if(value.length>0&&value.charCodeAt(0)==65279)value=value.substring(1);return value;}function readJson(file,label){try{return JSON.parse(readText(file,label));}catch(ex){fail(label,'JSON no valido: '+clean(ex));}}";
    js = js + "function isArray(value){return Object.prototype.toString.call(value)=='[object Array]';}function stable(value){if(value===null)return 'null';if(isArray(value)){var rows=[];for(var i=0;i<value.length;i++)rows.push(stable(value[i]));return '['+rows.join(',')+']';}if(typeof value=='object'){var keys=[];for(var key in value)if(Object.prototype.hasOwnProperty.call(value,key))keys.push(String(key));keys.sort();var pairs=[];for(var j=0;j<keys.length;j++)pairs.push(JSON.stringify(keys[j])+':'+stable(value[keys[j]]));return '{'+pairs.join(',')+'}';}return JSON.stringify(value);}function payloadHash(object){var copy={};for(var key in object)if(Object.prototype.hasOwnProperty.call(object,key)&&key!='payload_sha256')copy[key]=object[key];return shaText(stable(copy));}function verifyPayload(object,label){var expected=String(object.payload_sha256||'').toLowerCase();if(!/^[0-9a-f]{64}$/.test(expected))fail(label,'payload_sha256 ausente o invalido');var actual=payloadHash(object);if(actual!=expected)fail(label,'payload_sha256 no coincide con el contenido canonico');return actual;}";
    js = js + "function canon(file){return String(file.getCanonicalPath()).replace(/\\\\/g,'/');}function same(a,b){return canon(a).toLowerCase()==canon(b).toLowerCase();}function inside(file,base){var child=canon(file).toLowerCase(),root=canon(base).toLowerCase();return child==root||child.indexOf(root+'/')==0;}function requireExact(actual,expected,label){if(!same(actual,expected))fail(label,'ruta canonica no coincide: '+canon(actual));}function verifyRecord(file,record,label,boundary){if(record==null||typeof record!='object')fail(label,'registro de manifest ausente');if(!inside(file,boundary))fail(label,'ruta fuera del directorio autorizado');if(!file.isFile())fail(label,'archivo ausente');var expectedSize=Number(record.size_bytes);if(!isFinite(expectedSize)||expectedSize<0||Math.floor(expectedSize)!=expectedSize)fail(label,'size_bytes invalido');if(Number(file.length())!=expectedSize)fail(label,'tamano distinto: esperado '+expectedSize+', real '+file.length());var expectedHash=String(record.sha256||'').toLowerCase();if(!/^[0-9a-f]{64}$/.test(expectedHash))fail(label,'SHA-256 esperado invalido');var actualHash=shaFile(file,label);if(actualHash!=expectedHash)fail(label,'SHA-256 real distinto');return actualHash;}";
    js = js + "try{var root=new File('" + jsEscape(v4ProjectDir) + "').getCanonicalFile(),projectFile=new File('" + jsEscape(projectJsonPath) + "').getCanonicalFile(),bridgePointerFile=new File('" + jsEscape(v4BridgePointerJson) + "').getCanonicalFile(),generationDir=new File('" + jsEscape(v4BridgeStaticDir) + "').getCanonicalFile(),currentMontageFile=new File('" + jsEscape(v4CurrentMontagePointerPath) + "').getCanonicalFile(),revisionManifestFile=new File('" + jsEscape(v4MasterRevisionManifestPath) + "').getCanonicalFile(),planFile=new File('" + jsEscape(v4MasterNativePlanPath) + "').getCanonicalFile(),certificateFile=new File('" + jsEscape(v4MasterFidelityReportPath) + "').getCanonicalFile(),masterFile=new File('" + jsEscape(v4MasterImage) + "').getCanonicalFile(),ownershipFile=new File('" + jsEscape(v4OwnershipImage) + "').getCanonicalFile(),recoveryFile=new File('" + jsEscape(recoveryMarker) + "').getCanonicalFile();";
    js = js + "requireExact(bridgePointerFile,new File(root,'fiji_bridge/current_bridge.json'),'current_bridge.json');requireExact(currentMontageFile,new File(root,'derived/current_montage.json'),'current_montage.json');var revisionDir=new File(new File(root,'derived/montage_revisions'),'" + jsEscape(v4MasterRevisionId) + "').getCanonicalFile();requireExact(revisionManifestFile,new File(revisionDir,'revision_manifest.json'),'revision_manifest.json');requireExact(planFile,new File(revisionDir,'montage_native_plan.json'),'montage_native_plan.json');requireExact(certificateFile,new File(revisionDir,'montage_fidelity_certificate.json'),'montage_fidelity_certificate.json');requireExact(masterFile,new File(revisionDir,'montage_master.ome.tif'),'montage_master.ome.tif');requireExact(ownershipFile,new File(revisionDir,'panel_ownership.ome.tif'),'panel_ownership.ome.tif');if(recoveryFile.exists())fail('project_bridge_recovery.json','existe un estado de recuperacion pendiente');";
    js = js + "var bridgePointer=readJson(bridgePointerFile,'current_bridge.json');verifyPayload(bridgePointer,'current_bridge.json');if(String(bridgePointer.schema_version||'')!='cavity_current_fiji_bridge_v2')fail('current_bridge.json','schema v2 requerido');if(String(bridgePointer.project_id||'')!='" + jsEscape(v4ProjectId) + "')fail('current_bridge.json','project_id no coincide');if(String(bridgePointer.generation_id||'')!='" + jsEscape(v4BridgeGenerationId) + "')fail('current_bridge.json','generation_id ya no es current');if(String(bridgePointer.revision_id||'')!='" + jsEscape(v4MasterRevisionId) + "')fail('current_bridge.json','revision_id no coincide');var generationRelative=String(bridgePointer.generation_relative_path||'').replace(/\\\\/g,'/');if(generationRelative!='fiji_bridge/generations/" + jsEscape(v4BridgeGenerationId) + "')fail('current_bridge.json','generation_relative_path no canonica');requireExact(generationDir,new File(root,generationRelative),'current_bridge.json');var generationManifestFile=new File(generationDir,'bridge_generation_manifest.json').getCanonicalFile(),generationManifestFileHash=shaFile(generationManifestFile,'bridge_generation_manifest.json'),expectedGenerationManifestHash=String(bridgePointer.generation_manifest_sha256||'').toLowerCase();if(generationManifestFileHash!=expectedGenerationManifestHash)fail('bridge_generation_manifest.json','SHA-256 real no coincide con current_bridge.json');if(bridgePointer.generation_manifest_size_bytes==null||Number(bridgePointer.generation_manifest_size_bytes)!=Number(generationManifestFile.length()))fail('bridge_generation_manifest.json','tamano no coincide con current_bridge.json');";
    js = js + "var generationManifest=readJson(generationManifestFile,'bridge_generation_manifest.json');verifyPayload(generationManifest,'bridge_generation_manifest.json');if(String(generationManifest.schema_version||'')!='cavity_fiji_bridge_generation_v2')fail('bridge_generation_manifest.json','schema v2 requerido');if(String(generationManifest.project_id||'')!='" + jsEscape(v4ProjectId) + "')fail('bridge_generation_manifest.json','project_id no coincide');if(String(generationManifest.generation_id||'')!='" + jsEscape(v4BridgeGenerationId) + "')fail('bridge_generation_manifest.json','generation_id no coincide');if(String(generationManifest.revision_id||'')!='" + jsEscape(v4MasterRevisionId) + "')fail('bridge_generation_manifest.json','revision_id no coincide');var project=readJson(projectFile,'project.json'),expectedProjectPayload=String(generationManifest.project_payload_sha256||'').toLowerCase();if(!/^[0-9a-f]{64}$/.test(expectedProjectPayload))fail('project.json','project_payload_sha256 no esta sellado por el bridge');var actualProjectPayload=shaFile(projectFile,'project.json');if(actualProjectPayload!=expectedProjectPayload)fail('project.json','los bytes vivos no coinciden con el snapshot canonico del bridge');if(String(bridgePointer.project_payload_sha256||'').toLowerCase()!=expectedProjectPayload)fail('current_bridge.json','project_payload_sha256 no coincide con el manifest de generacion');var projectVersion=Number(project.project_version),manifestProjectVersion=Number(generationManifest.project_version),pointerProjectVersion=Number(bridgePointer.project_version);if(!isFinite(projectVersion)||Math.floor(projectVersion)!=projectVersion||projectVersion<0)fail('project.json','project_version no valido');if(projectVersion!=manifestProjectVersion||projectVersion!=pointerProjectVersion)fail('project.json','project_version no coincide entre proyecto, pointer y manifest');";
    js = js + "var bridgeArtifacts=generationManifest.artifacts;if(bridgeArtifacts==null||typeof bridgeArtifacts!='object')fail('bridge_generation_manifest.json','mapa artifacts ausente');var bridgeSeen={},bridgeCount=0;for(var bridgeKey in bridgeArtifacts){if(!Object.prototype.hasOwnProperty.call(bridgeArtifacts,bridgeKey))continue;var bridgeRecord=bridgeArtifacts[bridgeKey],bridgeRelative=String((bridgeRecord||{}).relative_path||bridgeKey).replace(/\\\\/g,'/'),bridgeFile=new File(generationDir,bridgeRelative).getCanonicalFile();verifyRecord(bridgeFile,bridgeRecord,'bridge artifact '+bridgeKey,generationDir);bridgeSeen[canon(bridgeFile).toLowerCase()]=1;bridgeCount++;}var requiredCsv=['project_fields.csv','panels.csv','panel_ownership_legend.csv','roi_sets.csv','calibrations.csv','surfaces.csv'];for(var csvIndex=0;csvIndex<requiredCsv.length;csvIndex++){var csvFile=new File(generationDir,requiredCsv[csvIndex]).getCanonicalFile();if(!bridgeSeen[canon(csvFile).toLowerCase()])fail(requiredCsv[csvIndex],'CSV no sellado por bridge_generation_manifest.json');}";
    js = js + "var external=generationManifest.external_artifacts;if(external==null||typeof external!='object')fail('bridge_generation_manifest.json','external_artifacts ausente');var externalSeen={},externalCount=0;for(var externalKey in external){if(!Object.prototype.hasOwnProperty.call(external,externalKey))continue;var externalRecord=external[externalKey],externalRelative=String((externalRecord||{}).relative_path||'').replace(/\\\\/g,'/');if(externalRelative=='')fail('external artifact '+externalKey,'relative_path ausente');var externalFile=new File(root,externalRelative).getCanonicalFile(),externalCanonical=canon(externalFile).toLowerCase();if(externalSeen[externalCanonical])fail('external artifact '+externalKey,'ruta duplicada');verifyRecord(externalFile,externalRecord,'external artifact '+externalKey,root);externalSeen[externalCanonical]=1;externalCount++;}if(externalCount!=6)fail('bridge_generation_manifest.json','external_artifacts no contiene las seis entradas exactas');var requiredExternal=[currentMontageFile,revisionManifestFile,planFile,certificateFile,masterFile,ownershipFile],requiredExternalLabels=['current_montage.json','revision_manifest.json','montage_native_plan.json','montage_fidelity_certificate.json','montage_master.ome.tif','panel_ownership.ome.tif'];for(var externalIndex=0;externalIndex<requiredExternal.length;externalIndex++){if(!externalSeen[canon(requiredExternal[externalIndex]).toLowerCase()])fail(requiredExternalLabels[externalIndex],'artefacto no sellado en external_artifacts');}";
    js = js + "var currentMontage=readJson(currentMontageFile,'current_montage.json');var currentPayload=verifyPayload(currentMontage,'current_montage.json');if(currentPayload!='" + jsEscape(v4CurrentMontagePointerSha256) + "')fail('current_montage.json','payload_sha256 no coincide con project_fields.csv');if(String(currentMontage.project_id||'')!='" + jsEscape(v4ProjectId) + "'||String(currentMontage.revision_id||'')!='" + jsEscape(v4MasterRevisionId) + "')fail('current_montage.json','identidad de proyecto/revision no coincide');var expectedRevisionRelative='derived/montage_revisions/" + jsEscape(v4MasterRevisionId) + "';if(String(currentMontage.revision_relative_path||'').replace(/\\\\/g,'/')!=expectedRevisionRelative)fail('current_montage.json','revision_relative_path no canonica');";
    js = js + "var revisionManifest=readJson(revisionManifestFile,'revision_manifest.json');var revisionPayload=verifyPayload(revisionManifest,'revision_manifest.json');if(revisionPayload!='" + jsEscape(v4MasterRevisionManifestSha256) + "')fail('revision_manifest.json','payload_sha256 no coincide con project_fields.csv');if(String(revisionManifest.project_id||'')!='" + jsEscape(v4ProjectId) + "'||String(revisionManifest.revision_id||'')!='" + jsEscape(v4MasterRevisionId) + "')fail('revision_manifest.json','identidad de proyecto/revision no coincide');if(String(revisionManifest.status||'').toUpperCase()!='PASS')fail('revision_manifest.json','status no es PASS');var revisionArtifacts=revisionManifest.artifacts;if(revisionArtifacts==null||typeof revisionArtifacts!='object')fail('revision_manifest.json','mapa artifacts ausente');var revisionExpected={master:masterFile,ownership:ownershipFile,certificate:certificateFile,plan:planFile},revisionExpectedHash={master:'" + jsEscape(v4MasterSha256) + "',ownership:'" + jsEscape(v4MasterOwnershipSha256) + "',certificate:'" + jsEscape(v4MasterFidelitySha256) + "',plan:'" + jsEscape(v4MasterNativePlanSha256) + "'};for(var revisionKey in revisionExpected){if(!Object.prototype.hasOwnProperty.call(revisionExpected,revisionKey))continue;var revisionRecord=revisionArtifacts[revisionKey];if(revisionRecord==null)fail('revision_manifest.json','falta artefacto '+revisionKey);var revisionName=String(revisionRecord.name||'');var revisionFile=new File(revisionDir,revisionName).getCanonicalFile();requireExact(revisionFile,revisionExpected[revisionKey],revisionKey);var revisionHash=verifyRecord(revisionFile,revisionRecord,revisionKey,revisionDir);if(revisionHash!=String(revisionExpectedHash[revisionKey]).toLowerCase())fail(revisionKey,'SHA-256 no coincide con project_fields.csv');}";
    js = js + "var currentBridgeFileHash=shaFile(bridgePointerFile,'current_bridge.json');OUT='OK|generation='+clean('" + jsEscape(v4BridgeGenerationId) + "')+';revision='+clean('" + jsEscape(v4MasterRevisionId) + "')+';bridge_files='+bridgeCount+';external_files='+externalCount+';current_bridge_file_sha256='+currentBridgeFileHash+';generation_manifest_file_sha256='+generationManifestFileHash+';project_payload_sha256='+actualProjectPayload;}catch(ex){OUT='ERROR|'+clean(lastLabel)+'|'+clean(ex);}String(OUT);";
    return "" + eval("js", js);
}

function v55VerifyQuantitativeIntegrity(actionText, requireActiveMaster, showErrors) {
    v4RevisionBindingReady=0;v55IntegrityLastError="";
    if(!lightEnsureCurrentImage()){v55IntegrityLastError="No hay una imagen Light activa con identidad valida.";return 0;}
    if(lightSourceSha256==""||lengthOf(lightSourceSha256)!=64){v55IntegrityLastError="Falta el SHA-256 de la fuente.";if(showErrors)showMessage("Integridad cuantitativa bloqueada","No se puede "+actionText+".\n\n"+v55IntegrityLastError);return 0;}
    path=p1ResolveSourcePathReadOnly();if(path==""){v55IntegrityLastError="No se ha localizado la fuente DM3/DM4 registrada sin mutar schema 1.";return 0;}
    actual=IJ.checksum("SHA-256 file",path);if(actual!=lightSourceSha256){v55IntegrityLastError="El SHA-256 de la fuente no coincide con el registro.";if(showErrors)showMessage("Integridad cuantitativa bloqueada","No se puede "+actionText+".\n\n"+v55IntegrityLastError);return 0;}
    v55IntegrityLastError="";v4RevisionBindingReady=1;return 1;
}


function v4JsonHasStringField(jsonText, fieldName, fieldValue) {
    spacedNeedle = "\"" + fieldName + "\": \"" + fieldValue + "\"";
    compactNeedle = "\"" + fieldName + "\":\"" + fieldValue + "\"";
    if (indexOf(jsonText, spacedNeedle) >= 0) return 1;
    if (indexOf(jsonText, compactNeedle) >= 0) return 1;
    return 0;
}

function v4ValidateBridgeRevisionBinding(showErrors) {
    v4RevisionBindingReady = 0;
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "validar la revision activa", showErrors)) return 0;
    missing = "";
    if (v4MasterRevisionId == "") missing = missing + "master_revision_id\n";
    if (!v4IsSha256(v4CurrentMontagePointerSha256)) missing = missing + "current_montage_pointer_sha256\n";
    if (!v4IsSha256(v4MasterRevisionManifestSha256)) missing = missing + "master_revision_manifest_sha256\n";
    if (!v4IsSha256(v4MasterNativePlanSha256)) missing = missing + "master_native_plan_sha256\n";
    if (!v4IsSha256(v4MasterFidelitySha256)) missing = missing + "master_fidelity_sha256\n";
    if (!v4IsSha256(v4MasterSha256)) missing = missing + "master_sha256\n";
    if (!v4IsSha256(v4MasterOwnershipSha256)) missing = missing + "master_ownership_sha256\n";
    if (missing != "") {
        v4RevisionBindingError = "Campos ausentes o no validos:\n" + missing;
        if (showErrors) showMessage("Revision de montaje no valida", "Fiji no abrira ni medira este proyecto porque el puente no identifica de forma completa la revision activa.\n\n" + v4RevisionBindingError + "\nVuelva a Studio 5.6.0, publique una revision valida y prepare de nuevo el puente Fiji.");
        return 0;
    }
    liveErrors = "";
    if (!File.exists(v4BridgePointerJson)) liveErrors = liveErrors + "current_bridge.json ausente\n";
    else {
        liveBridgeText = File.openAsString(v4BridgePointerJson);
        if (!v4JsonHasStringField(liveBridgeText, "generation_id", v4BridgeGenerationId)) liveErrors = liveErrors + "la generacion Fiji ya no es current\n";
        if (!v4JsonHasStringField(liveBridgeText, "project_id", v4ProjectId)) liveErrors = liveErrors + "project_id del puente no coincide\n";
    }
    generationManifestPath = projectAwareJoinPath(v4BridgeStaticDir, "bridge_generation_manifest.json");
    if (!File.exists(generationManifestPath)) liveErrors = liveErrors + "bridge_generation_manifest.json ausente\n";
    else {
        generationManifestText = File.openAsString(generationManifestPath);
        if (!v4JsonHasStringField(generationManifestText, "generation_id", v4BridgeGenerationId)) liveErrors = liveErrors + "manifest de generacion incompatible\n";
        if (!v4JsonHasStringField(generationManifestText, "revision_id", v4MasterRevisionId)) liveErrors = liveErrors + "revision_id del puente incompatible\n";
    }
    expectedPointerPath = normalizeStoredPath(projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "derived"), "current_montage.json"));
    expectedRevisionDir = projectAwareJoinPath(projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "derived"), "montage_revisions"), v4MasterRevisionId);
    expectedManifestPath = normalizeStoredPath(projectAwareJoinPath(expectedRevisionDir, "revision_manifest.json"));
    expectedPlanPath = normalizeStoredPath(projectAwareJoinPath(expectedRevisionDir, "montage_native_plan.json"));
    expectedCertificatePath = normalizeStoredPath(projectAwareJoinPath(expectedRevisionDir, "montage_fidelity_certificate.json"));
    expectedMasterPath = normalizeStoredPath(projectAwareJoinPath(expectedRevisionDir, "montage_master.ome.tif"));
    expectedOwnershipPath = normalizeStoredPath(projectAwareJoinPath(expectedRevisionDir, "panel_ownership.ome.tif"));
    normalizedCurrentPointerPath=normalizeStoredPath(v4CurrentMontagePointerPath);
    if (normalizedCurrentPointerPath != expectedPointerPath) liveErrors = liveErrors + "ruta current_montage no canonica\n";
    normalizedRevisionManifestPath=normalizeStoredPath(v4MasterRevisionManifestPath);
    if (normalizedRevisionManifestPath != expectedManifestPath) liveErrors = liveErrors + "ruta de manifest no canonica\n";
    normalizedNativePlanPath=normalizeStoredPath(v4MasterNativePlanPath);
    if (normalizedNativePlanPath != expectedPlanPath) liveErrors = liveErrors + "ruta de plan no canonica\n";
    normalizedFidelityPath=normalizeStoredPath(v4MasterFidelityReportPath);
    if (normalizedFidelityPath != expectedCertificatePath) liveErrors = liveErrors + "ruta de certificado no canonica\n";
    normalizedMasterImagePath=normalizeStoredPath(v4MasterImage);
    if (normalizedMasterImagePath != expectedMasterPath) liveErrors = liveErrors + "ruta de maestro no canonica\n";
    normalizedOwnershipImagePath=normalizeStoredPath(v4OwnershipImage);
    if (normalizedOwnershipImagePath != expectedOwnershipPath) liveErrors = liveErrors + "ruta de ownership no canonica\n";
    if (!File.exists(expectedPointerPath)) liveErrors = liveErrors + "current_montage.json ausente\n";
    else {
        currentPointerText = File.openAsString(expectedPointerPath);
        if (!v4JsonHasStringField(currentPointerText, "project_id", v4ProjectId)) liveErrors = liveErrors + "project_id de current_montage incompatible\n";
        if (!v4JsonHasStringField(currentPointerText, "revision_id", v4MasterRevisionId)) liveErrors = liveErrors + "revision_id ya no es current\n";
        if (!v4JsonHasStringField(currentPointerText, "payload_sha256", v4CurrentMontagePointerSha256)) liveErrors = liveErrors + "hash de current_montage incompatible\n";
    }
    if (!File.exists(expectedManifestPath) || !File.exists(expectedPlanPath) || !File.exists(expectedCertificatePath) || !File.exists(expectedMasterPath) || !File.exists(expectedOwnershipPath)) liveErrors = liveErrors + "faltan artefactos de la revision inmutable\n";
    else {
        revisionManifestText = File.openAsString(expectedManifestPath);
        if (!v4JsonHasStringField(revisionManifestText, "project_id", v4ProjectId)) liveErrors = liveErrors + "project_id del manifest incompatible\n";
        if (!v4JsonHasStringField(revisionManifestText, "revision_id", v4MasterRevisionId)) liveErrors = liveErrors + "revision_id del manifest incompatible\n";
        if (!v4JsonHasStringField(revisionManifestText, "payload_sha256", v4MasterRevisionManifestSha256)) liveErrors = liveErrors + "hash del manifest incompatible\n";
        if (indexOf(toLowerCase(revisionManifestText), v4MasterNativePlanSha256) < 0) liveErrors = liveErrors + "hash del plan no vinculado por el manifest\n";
        if (indexOf(toLowerCase(revisionManifestText), v4MasterFidelitySha256) < 0) liveErrors = liveErrors + "hash del certificado no vinculado por el manifest\n";
        if (indexOf(toLowerCase(revisionManifestText), v4MasterSha256) < 0) liveErrors = liveErrors + "hash del maestro no vinculado por el manifest\n";
        if (indexOf(toLowerCase(revisionManifestText), v4MasterOwnershipSha256) < 0) liveErrors = liveErrors + "hash de ownership no vinculado por el manifest\n";
    }
    if (liveErrors != "") {
        v4RevisionBindingError = "El estado vivo no coincide con la generacion cargada:\n" + liveErrors;
        if (showErrors) showMessage("Revision de montaje cambiada o corrupta", v4RevisionBindingError + "\nVuelva a Studio, regenere el puente y recargue el proyecto.");
        return 0;
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "validar la revision activa", showErrors)) return 0;
    if (!v55VerifyQuantitativeIntegrity("validar la revision activa", 0, showErrors)) return 0;
    v4RevisionBindingError = "";
    v4RevisionBindingReady = 1;
    return 1;
}

function v4StampCurrentRevisionBinding() {
    if (!lightProjectLoaded) return 0;
    Roi.setProperty("Revision_id", lightCurrentRevision);
    Roi.setProperty("Light_project_id", lightProjectId);
    Roi.setProperty("Light_project_uid", lightProjectUid);
    Roi.setProperty("Light_image_id", lightImageId);
    Roi.setProperty("Source_sha256", lightSourceSha256);
    return 1;
}


function v4SelectedRoiMatchesCurrentRevision() {
    if (!v4RevisionBindingReady) return 0;
    if (propString("Revision_id", "") != v4MasterRevisionId) return 0;
    if (toLowerCase(propString("Current_montage_pointer_sha256", "")) != v4CurrentMontagePointerSha256) return 0;
    if (toLowerCase(propString("Master_revision_manifest_sha256", "")) != v4MasterRevisionManifestSha256) return 0;
    if (toLowerCase(propString("Master_native_plan_sha256", "")) != v4MasterNativePlanSha256) return 0;
    if (toLowerCase(propString("Master_sha256", "")) != v4MasterSha256) return 0;
    if (toLowerCase(propString("Master_ownership_sha256", "")) != v4MasterOwnershipSha256) return 0;
    return 1;
}

function v4CountRevisionBindingMismatches() {
    run("ROI Manager...");
    mismatchCount = 0;
    bindingTotal = roiManager("count");
    bindingSelected = roiManager("index");
    for (bindingIndex=0; bindingIndex<bindingTotal; bindingIndex++) {
        if (!safeRoiSelect(bindingIndex)) continue;
        if (!v4SelectedRoiMatchesCurrentRevision()) mismatchCount++;
    }
    if (bindingSelected >= 0 && bindingSelected < bindingTotal) safeRoiSelect(bindingSelected);
    return mismatchCount;
}

function v4RequireCurrentRevisionBinding(actionText, showErrors) {
    if (!v4ValidateBridgeRevisionBinding(0)) {
        if (showErrors) showMessage("Accion bloqueada", "No se puede " + actionText + " porque la revision activa no tiene un binding completo.\n\n" + v4RevisionBindingError);
        return 0;
    }
    if (!v55VerifyQuantitativeIntegrity(actionText, 1, showErrors)) return 0;
    mismatches = v4CountRevisionBindingMismatches();
    if (mismatches > 0) {
        if (showErrors) showMessage("Revision de sesion incompatible", "No se puede " + actionText + ": hay " + mismatches + " ROI sin binding o pertenecientes a otra revision del montaje.\n\nNo se inferira identidad por nombre de archivo. Conserve el ZIP original para revision y cargue o genere una sesion de " + v4MasterRevisionId + ".");
        return 0;
    }
    return 1;
}

function v4RevisionBindingJson() {
    return "{\"schema_version\":\"cavity_revision_binding_v1\",\"project_id\":\"" + jsonEscape(v4ProjectId) + "\",\"revision_id\":\"" + jsonEscape(v4MasterRevisionId) + "\",\"current_montage_pointer_sha256\":\"" + v4CurrentMontagePointerSha256 + "\",\"master_revision_manifest_sha256\":\"" + v4MasterRevisionManifestSha256 + "\",\"master_native_plan_sha256\":\"" + v4MasterNativePlanSha256 + "\",\"master_sha256\":\"" + v4MasterSha256 + "\",\"master_ownership_sha256\":\"" + v4MasterOwnershipSha256 + "\"}\n";
}

function v4WriteRevisionBindingIntoSessionZip(path) {
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "sellar la sesion ROI", 1)) return 0;
    if (!v4RevisionBindingReady || path == "" || !File.exists(path)) return 0;
    bindingJson = v4RevisionBindingJson();
    js = "var File=Packages.java.io.File,FIS=Packages.java.io.FileInputStream,FOS=Packages.java.io.FileOutputStream,ZIS=Packages.java.util.zip.ZipInputStream,ZOS=Packages.java.util.zip.ZipOutputStream,ZE=Packages.java.util.zip.ZipEntry,Reflect=Packages.java.lang.reflect.Array,ByteType=Packages.java.lang.Byte.TYPE,Files=Packages.java.nio.file.Files,CopyOption=Packages.java.nio.file.CopyOption,Replace=Packages.java.nio.file.StandardCopyOption.REPLACE_EXISTING;";
    js = js + "var src=new File('" + jsEscape(path) + "'),tmp=new File('" + jsEscape(path + ".binding.tmp") + "'),zin=null,zout=null,OUT='ERROR';try{if(tmp.exists())tmp.delete();zin=new ZIS(new FIS(src));zout=new ZOS(new FOS(tmp));var buf=Reflect.newInstance(ByteType,8192),entry;while((entry=zin.getNextEntry())!=null){var name=String(entry.getName());if(name!='cavity_revision_binding.json'){zout.putNextEntry(new ZE(name));var count;while((count=zin.read(buf))>0)zout.write(buf,0,count);zout.closeEntry();}zin.closeEntry();}var payload=new Packages.java.lang.String('" + jsEscape(bindingJson) + "').getBytes('UTF-8');zout.putNextEntry(new ZE('cavity_revision_binding.json'));zout.write(payload,0,payload.length);zout.closeEntry();zin.close();zin=null;zout.close();zout=null;var opts=Reflect.newInstance(CopyOption,1);opts[0]=Replace;Files.move(tmp.toPath(),src.toPath(),opts);OUT='OK';}catch(ex){OUT='ERROR|'+String(ex);}finally{try{if(zin!=null)zin.close();}catch(ignore){}try{if(zout!=null)zout.close();}catch(ignore){}if(OUT!='OK'&&tmp.exists())tmp.delete();}String(OUT);";
    result = "" + eval("js", js);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de sellar la sesion ROI", 1)) return 0;
    if (result == "OK") return 1;
    showMessage("Sesion no certificada", "Se guardaron las ROI, pero no se pudo insertar cavity_revision_binding.json. La sesion queda bloqueada para analisis.\n\n" + result);
    return 0;
}

function v4ResolvePath(path) {
    path = normalizeStoredPath(path);
    if (path == "") return "";
    if (lengthOf(path) >= 2 && substring(path,1,2) == ":") return "" + path;
    if (startsWith(path,"/") || startsWith(path,"//")) return "" + path;
    resolvedPath = projectAwareJoinPath(v4ProjectDir, path);
    return "" + resolvedPath;
}

function v4ProjectSummary() {
    text = "Proyecto: " + v4ProjectName + "\n";
    text = text + "Revision activa: " + v4MasterRevisionId + "\n";
    text = text + "Estudio: " + v4StudyName + "\n";
    text = text + "Muestra: " + v4Material + " | " + v4Condition + "\n";
    text = text + "Lamina: " + v4SpecimenLabel + "\n";
    text = text + "Adquisicion: " + v4AcquisitionLabel + "\n";
    text = text + "Escala: " + d2s(v4PixelWidth, 9) + " x " + d2s(v4PixelHeight, 9) + " " + v4PixelUnit + "/px\n";
    if (sourceImageList != "") text = text + "Fuentes explicitas: " + sourceImageList + "\n";
    else if (sourceFirst != "" || sourceLast != "") text = text + "Rango informativo: " + sourceFirst + " - " + sourceLast + "\n";
    text = text + "Paneles: " + projectAwarePanelCount + " | Geometria: " + v4PanelGeometryStatus + " | Solape: " + v4PanelOverlapPolicy + "\n";
    text = text + "Conjunto ROI: " + v4ActiveRoiSetId;
    return text;
}

function v4ApplyScale() {
    if (nImages() <= 0 || isNaN(v4PixelWidth) || v4PixelWidth <= 0) return 0;
    if (!v4CheckImageScaleAgainstProject(1)) return 0;
    setVoxelSize(v4PixelWidth, v4PixelHeight, 1, v4PixelUnit);
    if (!updateScaleMaybe()) {
        showMessage("Escala no aplicada", "Fiji no ha aceptado la calibracion activa del proyecto.");
        return 0;
    }
    expectedX = v4ProjectScaleNmX();
    expectedY = v4ProjectScaleNmY();
    if (v4RelativeDifference(nmPerPixelX, expectedX) > 0.000001 || v4RelativeDifference(nmPerPixelY, expectedY) > 0.000001) {
        showMessage("Escala no aplicada", "La calibracion activa no coincide con la escala leida despues de aplicarla.\n\nEsperada: " + d2s(expectedX,9) + " x " + d2s(expectedY,9) + " nm/px\nLeida: " + d2s(nmPerPixelX,9) + " x " + d2s(nmPerPixelY,9) + " nm/px");
        return 0;
    }
    projectAwarePixelWidth = "" + v4PixelWidth;
    projectAwarePixelHeight = "" + v4PixelHeight;
    projectAwarePixelUnit = v4PixelUnit;
    v4ScaleConflict = 0;
    v4ScaleConflictText = "";
    showStatus("Calibracion activa aplicada: " + v4CalibrationId);
    return 1;
}

function v4ProjectScaleNmX() {
    f = unitToNmFactor(v4PixelUnit);
    if (f <= 0 || isNaN(v4PixelWidth) || v4PixelWidth <= 0) return NaN;
    return v4PixelWidth*f;
}

function v4ProjectScaleNmY() {
    f = unitToNmFactor(v4PixelUnit);
    if (f <= 0 || isNaN(v4PixelHeight) || v4PixelHeight <= 0) return NaN;
    return v4PixelHeight*f;
}

function v4RelativeDifference(a, b) {
    if (isNaN(a) || isNaN(b) || a <= 0 || b <= 0) return 0;
    denom = max2(abs(a), abs(b));
    if (denom <= 0) return 0;
    return abs(a-b)/denom;
}

function v4InspectActiveImageScale() {
    v4ImageScaleNmX = NaN;
    v4ImageScaleNmY = NaN;
    v4ImageScaleUnit = "";
    if (nImages() <= 0) return 0;
    getPixelSize(imageScaleUnit, imageScaleX, imageScaleY);
    imageScaleFactor = unitToNmFactor(imageScaleUnit);
    if (imageScaleFactor <= 0 || imageScaleX <= 0 || imageScaleY <= 0) return 0;
    v4ImageScaleNmX = imageScaleX*imageScaleFactor;
    v4ImageScaleNmY = imageScaleY*imageScaleFactor;
    v4ImageScaleUnit = imageScaleUnit;
    return 1;
}

function v4CheckImageScaleAgainstProject(showDialog) {
    v4ScaleConflict = 0;
    v4ScaleConflictText = "";
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "comprobar la escala de la imagen", showDialog)) return 0;
    projectNmX = v4ProjectScaleNmX();
    projectNmY = v4ProjectScaleNmY();
    if (isNaN(projectNmX) || isNaN(projectNmY) || projectNmX <= 0 || projectNmY <= 0) {
        v4ScaleConflict = 1;
        v4ScaleConflictText = "La calibracion activa del proyecto no es valida.";
        if (showDialog) showMessage("Calibracion no valida", v4ScaleConflictText + "\n\nRevise la pestana Referencias en Studio.");
        return 0;
    }
    // An uncalibrated image (pixel units) can safely receive the project scale.
    if (!v4InspectActiveImageScale()) return 1;
    dx = v4RelativeDifference(v4ImageScaleNmX, projectNmX);
    dy = v4RelativeDifference(v4ImageScaleNmY, projectNmY);
    if (max2(dx,dy) <= 0.01) return 1;
    ratioX = v4ImageScaleNmX/projectNmX;
    ratioY = v4ImageScaleNmY/projectNmY;
    v4ScaleConflict = 1;
    v4ScaleConflictText = "OME-TIFF: " + d2s(v4ImageScaleNmX,9) + " x " + d2s(v4ImageScaleNmY,9) + " nm/px (unidad leida: " + v4ImageScaleUnit + ")\nProyecto " + v4CalibrationId + ": " + d2s(projectNmX,9) + " x " + d2s(projectNmY,9) + " nm/px\nRelacion TIFF/proyecto: " + d2s(ratioX,6) + " x " + d2s(ratioY,6) + ".";
    if (v4ProjectDir != "") {
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "registrar el conflicto de escala", showDialog)) return 0;
        qcDir = projectAwareJoinPath(v4ProjectDir, "qc");
        makeDirIfMissing(qcDir);
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "registrar el conflicto de escala", showDialog)) return 0;
        File.saveString("Cavity TEM Studio v5.6.0 - CONFLICTO DE ESCALA\n\n" + v4ScaleConflictText + "\n\nNo se permitio iniciar una medicion cuantitativa.\n", projectAwareJoinPath(qcDir, "fiji_scale_conflict.txt"));
    }
    if (showDialog) showMessage("Conflicto de escala: medicion bloqueada", v4ScaleConflictText + "\n\nNo mida hasta decidir cual escala es correcta. Revise los metadatos DM3/DM4 y la calibracion activa en Studio; despues pulse Actualizar y vuelva a abrir Fiji.");
    return 0;
}

function v4AttachImageContext() {
    if (nImages() <= 0) return;
    info = "Cavity TEM Studio 5 context\n";
    info = info + "project_id=" + v4ProjectId + "\n";
    info = info + "revision_id=" + v4MasterRevisionId + "\n";
    info = info + "current_montage_pointer_sha256=" + v4CurrentMontagePointerSha256 + "\n";
    info = info + "master_revision_manifest_sha256=" + v4MasterRevisionManifestSha256 + "\n";
    info = info + "master_native_plan_sha256=" + v4MasterNativePlanSha256 + "\n";
    info = info + "master_sha256=" + v4MasterSha256 + "\n";
    info = info + "master_ownership_sha256=" + v4MasterOwnershipSha256 + "\n";
    info = info + "study_id=" + v4StudyId + "\n";
    info = info + "sample_id=" + v4SampleId + "\n";
    info = info + "specimen_id=" + v4SpecimenId + "\n";
    info = info + "acquisition_id=" + v4AcquisitionId + "\n";
    info = info + "calibration_id=" + v4CalibrationId + "\n";
    info = info + "surface_id=" + v4SurfaceId + "\n";
    info = info + "active_roi_set_id=" + v4ActiveRoiSetId + "\n";
    setMetadata("Info", info);
}

function v4CreatePanelsFromManifest() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("actualizar paneles", 1)) return;
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra primero el montaje maestro."); return; }
    // source_manifest.csv is an immutable source registry, not the layout
    // authority. Studio 5.6.0 writes certified layout/plan geometry to panels.csv.
    panelsPath = v4PanelsCsv;
    if (panelsPath == "") panelsPath = projectAwareJoinPath(v4BridgeStaticDir, "panels.csv");
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "leer los paneles certificados", 1)) return;
    if (!File.exists(panelsPath)) { showMessage("Paneles SVG no disponibles", "No existe:\n" + panelsPath + "\n\nVuelva a Studio, valide el SVG, construya el maestro y pulse Preparar y abrir este proyecto."); return; }
    run("ROI Manager...");
    existing = countTypeFast("panel");
    text=File.openAsString(panelsPath); lines=split(text,"\n");
    if(lines.length<2) return;
    header=split(replace(lines[0],"\r",""),",");
    ixSourceId=projectAwareColumnIndex(header,"source_id");
    ixSeq=projectAwareColumnIndex(header,"sequence_number");
    ixFile=projectAwareColumnIndex(header,"source_filename");
    ixSourcePath=projectAwareColumnIndex(header,"source_relative_path");
    ixPanel=projectAwareColumnIndex(header,"panel_id");
    ixX=projectAwareColumnIndex(header,"x_global_px");
    ixY=projectAwareColumnIndex(header,"y_global_px");
    ixW=projectAwareColumnIndex(header,"width_px");
    ixH=projectAwareColumnIndex(header,"height_px");
    ixSourceW=projectAwareColumnIndex(header,"source_width_px");
    ixSourceH=projectAwareColumnIndex(header,"source_height_px");
    ixRot=projectAwareColumnIndex(header,"rotation_deg");
    ixZ=projectAwareColumnIndex(header,"z_order");
    ixRank=projectAwareColumnIndex(header,"composition_rank_bottom_to_top");
    ixOwner=projectAwareColumnIndex(header,"owner_code");
    ixOwnedPixels=projectAwareColumnIndex(header,"effective_owned_pixels");
    ixOccluded=projectAwareColumnIndex(header,"occluded_pixel_count");
    ixZSource=projectAwareColumnIndex(header,"z_order_source");
    ixGeometrySource=projectAwareColumnIndex(header,"geometry_source");
    ixOwnershipSource=projectAwareColumnIndex(header,"ownership_source");
    ixOwnershipCertified=projectAwareColumnIndex(header,"ownership_certified");
    if(ixPanel<0||ixX<0||ixY<0||ixW<0||ixH<0||ixZ<0) { showMessage("Geometria SVG incompleta", "fiji_bridge/panels.csv no contiene panel_id, posicion, dimensiones y z_order. Actualice el puente desde Studio; source_manifest.csv no se usara como sustituto ambiguo."); return; }
    validPanelRows = 0;
    for(checkLine=1; checkLine<lines.length; checkLine++) {
        checkText=replace(lines[checkLine],"\r",""); if(checkText=="") continue;
        checkCells=split(checkText,",");
        checkW=projectAwareParseFloat(projectAwareCsvCell(checkCells,ixW)); checkH=projectAwareParseFloat(projectAwareCsvCell(checkCells,ixH));
        checkId=projectAwareCsvCell(checkCells,ixPanel);
        if(checkW>0&&checkH>0&&checkId!="") validPanelRows++;
    }
    if (validPanelRows == 0) { showMessage("Paneles no actualizados", "panels.csv no contiene ninguna fila con identidad y geometria validas. No se modifico el ROI Manager."); return; }
    backupPanelsPath = "";
    if (existing > 0) {
        if (!getBoolean("Ya existen " + existing + " paneles. Sustituirlos por " + validPanelRows + " paneles de la geometria SVG certificada?\n\nSe guardara antes una copia completa de la sesion.", "Actualizar", "Cancelar")) return;
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "actualizar los paneles certificados", 1)) return;
        backupPanelsPath = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir,"sessions"),"roi_session_before_panel_update_"+v4Timestamp()+".zip");
        roiManager("save",backupPanelsPath);
        n0=roiManager("count");
        for (di=n0-1; di>=0; di=di-1) { safeRoiSelect(di); if (currentRoiType()=="panel") roiManager("delete"); }
    }
    created=0; skipped=0;
    for(li=1; li<lines.length; li++) {
        line=replace(lines[li],"\r",""); if(line=="") continue;
        c=split(line,",");
        x=projectAwareParseFloat(projectAwareCsvCell(c,ixX)); y=projectAwareParseFloat(projectAwareCsvCell(c,ixY));
        w=projectAwareParseFloat(projectAwareCsvCell(c,ixW)); h=projectAwareParseFloat(projectAwareCsvCell(c,ixH));
        if(w<=0||h<=0) { skipped++; continue; }
        seq=round(projectAwareParseFloat(projectAwareCsvCell(c,ixSeq)));
        panelId=projectAwareCsvCell(c,ixPanel);
        if(panelId=="") { skipped++; continue; }
        svgPanelId=panelId;
        sourceId=projectAwareCsvCell(c,ixSourceId); sourceFile=projectAwareCsvCell(c,ixFile);
        sourcePath=projectAwareCsvCell(c,ixSourcePath);
        sourceW=projectAwareParseFloat(projectAwareCsvCell(c,ixSourceW)); sourceH=projectAwareParseFloat(projectAwareCsvCell(c,ixSourceH));
        rot=projectAwareParseFloat(projectAwareCsvCell(c,ixRot));
        zOrder=projectAwareParseFloat(projectAwareCsvCell(c,ixZ));
        rank=created+1; if(ixRank>=0) rank=round(projectAwareParseFloat(projectAwareCsvCell(c,ixRank)));
        ownerCode=0; if(ixOwner>=0) ownerCode=round(projectAwareParseFloat(projectAwareCsvCell(c,ixOwner)));
        ownedPixels=""; if(ixOwnedPixels>=0) ownedPixels=projectAwareCsvCell(c,ixOwnedPixels);
        occludedPixels=""; if(ixOccluded>=0) occludedPixels=projectAwareCsvCell(c,ixOccluded);
        zSource=""; if(ixZSource>=0) zSource=projectAwareCsvCell(c,ixZSource);
        geometrySource=""; if(ixGeometrySource>=0) geometrySource=projectAwareCsvCell(c,ixGeometrySource);
        ownershipSource=""; if(ixOwnershipSource>=0) ownershipSource=projectAwareCsvCell(c,ixOwnershipSource);
        ownershipCertified="0"; if(ixOwnershipCertified>=0) ownershipCertified=projectAwareCsvCell(c,ixOwnershipCertified);
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "crear los paneles certificados", 1)) return;
        makeRectangle(x,y,w,h); Roi.setName(panelId); Roi.setGroup(0); Roi.setFillColor("#00000000"); Roi.setStrokeColor("white"); Roi.setUnscalableStrokeWidth(2);
        setCommonObjectProperties(); v4StampCurrentRevisionBinding(); Roi.setProperty("Type","panel"); Roi.setProperty("Object_type","panel"); Roi.setProperty("Scientific_role","region"); Roi.setProperty("ROI_set_id","PANELS"); Roi.setProperty("Object_id",panelId); Roi.setProperty("Object_uuid",v4Uuid());
        Roi.setProperty("Panel_id",panelId); Roi.setProperty("SVG_panel_id",svgPanelId); Roi.setProperty("Panel_order",d2s(zOrder,0)); Roi.setProperty("Z_order",d2s(zOrder,0)); Roi.setProperty("Composition_rank",d2s(rank,0)); Roi.setProperty("Owner_code",d2s(ownerCode,0)); Roi.setProperty("Effective_owned_pixels",ownedPixels); Roi.setProperty("Occluded_pixel_count",occludedPixels); Roi.setProperty("Source_id",sourceId); Roi.setProperty("Source_filename",sourceFile); Roi.setProperty("Source_relative_path",sourcePath); Roi.setProperty("Source_width_px",d2s(sourceW,0)); Roi.setProperty("Source_height_px",d2s(sourceH,0)); Roi.setProperty("Rotation_deg",d2s(rot,3)); Roi.setProperty("Z_order_source",zSource); Roi.setProperty("Geometry_source",geometrySource); Roi.setProperty("Ownership_source",ownershipSource); Roi.setProperty("Ownership_certified",ownershipCertified); Roi.setProperty("Project_id",v4ProjectId); Roi.setProperty("Calibration_id",v4CalibrationId); Roi.setProperty("Include_in_statistics","1"); Roi.setProperty("Count_valid","0"); Roi.setProperty("Size_valid","0"); Roi.setProperty("Position_valid","1"); Roi.setProperty("Tool_version",v4ToolVersion);
        roiManager("add"); idx=roiManager("count")-1; syncAreaObjectAtIndex(idx); created++;
    }
    showAllRois();
    if (created > 0) syncAllObjects(0);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de crear los paneles certificados", 1)) return;
    ownerText = "geometria SVG/plan";
    if (v4OwnershipCertified) ownerText = "raster de ownership certificado";
    backupText = "";
    if (backupPanelsPath != "") backupText = "\nCopia previa: " + backupPanelsPath;
    showMessage("Paneles SVG actualizados", "Creados: "+created+"\nOmitidos sin geometria: "+skipped+"\nFuente: "+panelsPath+"\nAsignacion: "+ownerText+backupText+"\n\nEl fondo valido se obtiene de la cobertura de estos paneles; no necesita dibujar una mascara solo para retirar el negro exterior.");
}

function v4ChooseRoiSet() {
    if (!v4ProjectLoaded && !v4EnsureProject()) return;
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "seleccionar el conjunto ROI", 1)) return;
    if (!File.exists(v4RoiSetsCsv)) { showMessage("Sin registro ROI", "No existe:\n" + v4RoiSetsCsv); return; }
    text = File.openAsString(v4RoiSetsCsv);
    lines = split(text, "\n");
    if (lines.length < 2) return;
    ids = newArray(0); labels = newArray(0);
    for (i=1; i<lines.length; i++) {
        line = replace(lines[i], "\r", "");
        if (line == "") continue;
        cells = split(line, ",");
        if (cells.length < 2) continue;
        id = projectAwareCleanCsvValue(cells[0]);
        name = projectAwareCleanCsvValue(cells[1]);
        ids = Array.concat(ids, newArray(id));
        labels = Array.concat(labels, newArray(id + " - " + name));
    }
    if (ids.length == 0) return;
    defaultIndex = 0;
    for (i=0; i<ids.length; i++) if (ids[i] == v4ActiveRoiSetId) defaultIndex = i;
    Dialog.create("Seleccionar conjunto ROI");
    Dialog.addChoice("Conjunto activo:", labels, labels[defaultIndex]);
    Dialog.show();
    selectedLabel = Dialog.getChoice();
    selectedIndex = 0;
    for (i=0; i<labels.length; i++) if (labels[i] == selectedLabel) selectedIndex = i;
    v4ReadRoiSet(ids[selectedIndex]);
    if (!v55PersistActiveRoiSet("seleccionar el conjunto ROI")) return;
    v4SuggestToolForActiveSet();
    showStatus("Conjunto ROI activo: " + v4ActiveRoiSetId + " - " + v4ActiveRoiSetName);
}

function v4ReadRoiSet(wantedId) {
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "leer el conjunto ROI", 1)) return 0;
    if (!File.exists(v4RoiSetsCsv)) return 0;
    text = File.openAsString(v4RoiSetsCsv);
    lines = split(text, "\n");
    for (i=1; i<lines.length; i++) {
        line = replace(lines[i], "\r", "");
        if (line == "") continue;
        cells = split(line, ",");
        if (cells.length < 9) continue;
        id = projectAwareCleanCsvValue(cells[0]);
        if (id != wantedId) continue;
        nextRoiSetName = projectAwareCleanCsvValue(cells[1]);
        nextObjectType = projectAwareCleanCsvValue(cells[2]);
        nextGeometry = projectAwareCleanCsvValue(cells[3]);
        nextIdPrefix = projectAwareCleanCsvValue(cells[4]);
        nextScientificRole = projectAwareCleanCsvValue(cells[5]);
        nextStrokeColor = projectAwareCleanCsvValue(cells[6]);
        nextFillColor = projectAwareCleanCsvValue(cells[7]);
        nextProtocolId = projectAwareCleanCsvValue(cells[8]);
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "leer el conjunto ROI", 1)) return 0;
        previousRoiSetId = v4ActiveRoiSetId;
        previousRoiSetName = v4ActiveRoiSetName;
        previousObjectType = v4ActiveObjectType;
        previousGeometry = v4ActiveGeometry;
        previousIdPrefix = v4ActiveIdPrefix;
        previousScientificRole = v4ActiveScientificRole;
        previousStrokeColor = v4ActiveStrokeColor;
        previousFillColor = v4ActiveFillColor;
        previousProtocolId = v4ActiveProtocolId;
        v4ActiveRoiSetId = id;
        v4ActiveRoiSetName = nextRoiSetName;
        v4ActiveObjectType = nextObjectType;
        v4ActiveGeometry = nextGeometry;
        v4ActiveIdPrefix = nextIdPrefix;
        v4ActiveScientificRole = nextScientificRole;
        v4ActiveStrokeColor = nextStrokeColor;
        v4ActiveFillColor = nextFillColor;
        v4ActiveProtocolId = nextProtocolId;
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar el conjunto ROI", 1)) {
            v4ActiveRoiSetId = previousRoiSetId;
            v4ActiveRoiSetName = previousRoiSetName;
            v4ActiveObjectType = previousObjectType;
            v4ActiveGeometry = previousGeometry;
            v4ActiveIdPrefix = previousIdPrefix;
            v4ActiveScientificRole = previousScientificRole;
            v4ActiveStrokeColor = previousStrokeColor;
            v4ActiveFillColor = previousFillColor;
            v4ActiveProtocolId = previousProtocolId;
            return 0;
        }
        return 1;
    }
    return 0;
}

function v4SuggestToolForActiveSet() {
    if (indexOf(v4ActiveGeometry, "line") >= 0 || indexOf(v4ActiveGeometry, "polyline") >= 0) setTool("polyline");
    else if (indexOf(v4ActiveGeometry, "rectangle") >= 0) setTool("rectangle");
    else if (indexOf(v4ActiveGeometry, "contour") >= 0 || indexOf(v4ActiveGeometry, "polygon") >= 0) setTool("freehand");
    else setTool("oval");
}

function v4AddSelectionToActiveSet() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra el montaje maestro o una imagen de analisis."); return; }
    if (selectionType < 0) { showMessage("Sin seleccion", "Dibuje primero una ROI con la geometria adecuada."); return; }
    run("ROI Manager...");
    // Transactional registration: clone the finished ROI before scanning IDs,
    // build all metadata on the clone and add it only once with its final name.
    // No __V4_PENDING__ object can remain after a failed or interrupted add.
    if (!v4StoreCurrentRoiClone("CavityV4RegistrationRoi")) {
        showMessage("ROI no registrada", "No se pudo conservar una copia segura de la seleccion.");
        return 0;
    }
    id = v4NextObjectId(v4ActiveIdPrefix);
    if (!v4RestoreStoredRoiClone("CavityV4RegistrationRoi", 0)) {
        v4ClearStoredRoiClone("CavityV4RegistrationRoi");
        showMessage("ROI no registrada", "La seleccion cambio antes de completar el registro. Dibujela de nuevo.");
        return 0;
    }
    now = d2s(getTime(),0);
    uuid = v4Uuid();
    subtype = "";
    visibleName = id;
    if (v4ActiveObjectType == "dislocation_loop") {
        subtype = v4LoopSubtypeForCurrentSelection();
        visibleName = v4VisibleLoopName(id, subtype);
    }
    Roi.setName(visibleName);
    v4SetCoreProperties(id, uuid, now);
    if (subtype != "") Roi.setProperty("Object_subtype", subtype);
    v4SetGeometryProperties();
    if (v4ActiveObjectType == "dislocation_loop") applyLoopStyle();
    else v4ApplyActiveStyle();
    before = roiManager("count");
    roiManager("add");
    after = roiManager("count");
    if (after != before+1) {
        v4RollbackRegistration(before);
        v4ClearStoredRoiClone("CavityV4RegistrationRoi");
        showMessage("ROI no registrada", "Fiji no confirmo el alta completa. No se ha conservado ningun objeto parcial.");
        return 0;
    }
    idx = after-1;
    safeRoiSelect(idx);
    if (propString("Object_id","") != id) {
        v4RollbackRegistration(before);
        v4ClearStoredRoiClone("CavityV4RegistrationRoi");
        showMessage("ROI no registrada", "La verificacion del identificador fallo. La adicion parcial se retiro.");
        return 0;
    }
    roiManager("update");
    v4ClearStoredRoiClone("CavityV4RegistrationRoi");
    roiManager("update");
    v4RefreshSpatialProperties(idx);
    showAllRois();
    safeRoiSelect(idx);
    showStatus("Objeto registrado: " + visibleName + " [" + id + "] en " + v4ActiveRoiSetId);
    return 1;
}

function v4StoreCurrentRoiClone(key) {
    if (nImages() <= 0 || selectionType < 0) return 0;
    js = "var imp=Packages.ij.IJ.getImage(),ok='0';if(imp!=null&&imp.getRoi()!=null){try{imp.setProperty('" + jsEscape(key) + "',imp.getRoi().clone());ok='1';}catch(ex){Packages.ij.IJ.log('Cavity ROI snapshot: '+ex);}}String(ok);";
    result = eval("js", js);
    if (result == "1") return 1;
    return 0;
}

function v4RestoreStoredRoiClone(key, clearAfter) {
    if (nImages() <= 0) return 0;
    js = "var imp=Packages.ij.IJ.getImage(),ok='0';if(imp!=null){var saved=imp.getProperty('" + jsEscape(key) + "');if(saved!=null){try{imp.setRoi(saved.clone());ok='1';}catch(ex){Packages.ij.IJ.log('Cavity ROI restore: '+ex);}if(" + clearAfter + ")imp.setProperty('" + jsEscape(key) + "',null);}}String(ok);";
    result = eval("js", js);
    if (result == "1") return 1;
    return 0;
}

function v4ClearStoredRoiClone(key) {
    if (nImages() <= 0) return;
    js = "var imp=Packages.ij.IJ.getImage();if(imp!=null)imp.setProperty('" + jsEscape(key) + "',null);";
    eval("js", js);
}

function v4RollbackRegistration(beforeCount) {
    run("ROI Manager...");
    while (roiManager("count") > beforeCount) {
        rollbackIndex = roiManager("count")-1;
        if (!safeRoiSelect(rollbackIndex)) return;
        roiManager("delete");
    }
}

function v4SetCoreProperties(id, uuid, created) {
    setCommonObjectProperties();
    v4StampCurrentRevisionBinding();
    Roi.setProperty("Object_id", id);
    Roi.setProperty("Object_uuid", uuid);
    Roi.setProperty("ROI_set_id", v4ActiveRoiSetId);
    Roi.setProperty("Object_type", v4ActiveObjectType);
    Roi.setProperty("Object_subtype", v4ActiveObjectType);
    Roi.setProperty("Geometry", v4ActiveGeometry);
    Roi.setProperty("Scientific_role", v4ActiveScientificRole);
    Roi.setProperty("Object_class", "confirmed");
    Roi.setProperty("Confidence", "high");
    Roi.setProperty("Review_status", "pending");
    Roi.setProperty("Include_in_statistics", "1");
    Roi.setProperty("Count_valid", "1");
    Roi.setProperty("Size_valid", "1");
    Roi.setProperty("Position_valid", "1");
    Roi.setProperty("Exclusion_reason", "");
    Roi.setProperty("Project_id", v4ProjectId);
    Roi.setProperty("Study_id", v4StudyId);
    Roi.setProperty("Sample_id", v4SampleId);
    Roi.setProperty("Specimen_id", v4SpecimenId);
    Roi.setProperty("Acquisition_id", v4AcquisitionId);
    Roi.setProperty("Calibration_id", v4CalibrationId);
    Roi.setProperty("Surface_id", v4SurfaceId);
    Roi.setProperty("Measurement_protocol_id", v4ActiveProtocolId);
    Roi.setProperty("Operator", operatorName);
    Roi.setProperty("Created_time_ms", created);
    Roi.setProperty("Modified_time_ms", created);
    Roi.setProperty("Tool_version", v4ToolVersion);
    // Also provide the legacy Type used by v8.3 tools.
    legacyType = v4ActiveObjectType;
    if (v4ActiveObjectType == "dislocation_loop" || v4ActiveObjectType == "precipitate") legacyType = v4ActiveObjectType;
    if (v4ActiveScientificRole == "region" && v4ActiveObjectType == "mask") legacyType = "analysis_mask";
    Roi.setProperty("Type", legacyType);
}

function v4SetGeometryProperties() {
    updateScaleMaybe();
    getSelectionBounds(x, y, w, h);
    cx = x + w/2; cy = y + h/2;
    Roi.setProperty("Center_x_px", d2s(cx,6));
    Roi.setProperty("Center_y_px", d2s(cy,6));
    Roi.setProperty("Center_x_nm", d2s(cx*nmPerPixelX,6));
    Roi.setProperty("Center_y_nm", d2s(cy*nmPerPixelY,6));
    Roi.setProperty("Bounds_x_px", d2s(x,6));
    Roi.setProperty("Bounds_y_px", d2s(y,6));
    Roi.setProperty("Bounds_width_px", d2s(w,6));
    Roi.setProperty("Bounds_height_px", d2s(h,6));
    areaPx = 0;
    getStatistics(areaPx);
    areaNm2 = areaPx * nmPerPixelX * nmPerPixelY;
    Roi.setProperty("Projected_area_nm2", d2s(areaNm2,6));
    if (areaNm2 > 0) Roi.setProperty("Equivalent_diameter_nm", d2s(2*sqrt(areaNm2/PI_VAL),6));
    major = max2(w*nmPerPixelX, h*nmPerPixelY);
    minor = min2(w*nmPerPixelX, h*nmPerPixelY);
    orientation = 0;
    if (h*nmPerPixelY > w*nmPerPixelX) orientation = 90;
    ellipseMetrics = v4InclinedEllipseMetrics();
    if (startsWith(ellipseMetrics, "1,")) {
        em = split(ellipseMetrics, ",");
        if (em.length >= 6) {
            major = parseFloat(em[1]);
            minor = parseFloat(em[2]);
            orientation = parseFloat(em[3]);
            cx = parseFloat(em[4]);
            cy = parseFloat(em[5]);
            Roi.setProperty("Center_x_px", d2s(cx,6));
            Roi.setProperty("Center_y_px", d2s(cy,6));
            Roi.setProperty("Center_x_nm", d2s(cx*nmPerPixelX,6));
            Roi.setProperty("Center_y_nm", d2s(cy*nmPerPixelY,6));
        }
    }
    Roi.setProperty("Major_axis_nm", d2s(major,6));
    Roi.setProperty("Minor_axis_nm", d2s(minor,6));
    Roi.setProperty("Orientation_deg", d2s(orientation,6));
    if (minor > 0) Roi.setProperty("Aspect_ratio", d2s(major/minor,6));
    if (selectionType == 5 || selectionType == 6 || selectionType == 7) {
        Roi.getCoordinates(xs, ys);
        len = polylineLengthNm(xs,ys);
        Roi.setProperty("Length_nm", d2s(len,6));
        if (v4ActiveObjectType == "cavity") Roi.setProperty("Equivalent_diameter_nm", d2s(len,6));
    }
    geometryObjectType = Roi.getProperty("Object_type");
    if (geometryObjectType == "") geometryObjectType = v4ActiveObjectType;
    if (geometryObjectType == "dislocation_loop" && (selectionType == 1 || selectionType == 2 || selectionType == 3 || selectionType == 4)) v4SetLoopMetrics();
}

function v4InclinedEllipseMetrics() {
    if (!v4SelectionIsEllipseRoi()) return "0";
    js = "var imp=Packages.ij.IJ.getImage(),r=imp==null?null:imp.getRoi(),out='0';if(r!=null&&String(r.getClass().getName())=='ij.gui.EllipseRoi'){try{var p=r.getParams();if(p!=null&&p.length>=5){var dx=p[2]-p[0],dy=p[3]-p[1],majorPx=Math.sqrt(dx*dx+dy*dy),ratio=Math.abs(p[4]),minorPx=majorPx*ratio,sx=" + d2s(nmPerPixelX,12) + ",sy=" + d2s(nmPerPixelY,12) + ",majorNm=Math.sqrt(dx*dx*sx*sx+dy*dy*sy*sy),ux=majorPx>0?-dy/majorPx:0,uy=majorPx>0?dx/majorPx:0,minorNm=minorPx*Math.sqrt(ux*ux*sx*sx+uy*uy*sy*sy),angle=Math.atan2(dy*sy,dx*sx)*180/Math.PI,cx=(p[0]+p[2])/2,cy=(p[1]+p[3])/2;if(angle<0)angle+=180;out='1,'+majorNm+','+minorNm+','+angle+','+cx+','+cy;}}catch(ex){Packages.ij.IJ.log('Cavity EllipseRoi metrics: '+ex);}}String(out);";
    return "" + eval("js", js);
}

function v4ApplyActiveStyle() {
    if (v4ActiveObjectType == "dislocation_loop") { applyLoopStyle(); return; }
    if (v4ActiveStrokeColor != "") Roi.setStrokeColor(v4ActiveStrokeColor);
    Roi.setUnscalableStrokeWidth(roiStrokeWidth);
    if (v4ActiveFillColor != "" && v4ActiveScientificRole != "line_feature" && v4ActiveScientificRole != "reference_feature") Roi.setFillColor(v4ActiveFillColor);
}

function v4NextObjectId(prefix) {
    run("ROI Manager...");
    selectedIndex = roiManager("index");
    n = roiManager("count"); maxSerial = 0;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        current = Roi.getProperty("Object_id");
        if (current == "") current = Roi.getName;
        if (startsWith(current, prefix + "_")) {
            serial = serialFromId(current);
            if (serial > maxSerial) maxSerial = serial;
        }
    }
    if (selectedIndex >= 0 && selectedIndex < n) safeRoiSelect(selectedIndex);
    return prefix + "_" + IJ.pad(maxSerial+1, 6);
}

function v4Uuid() {
    id = eval("js", "String(java.util.UUID.randomUUID())");
    return "" + id;
}

function v4RefreshSpatialProperties(idx) {
    if (!safeRoiSelect(idx)) return;
    spatialType = currentRoiType();
    getSelectionBounds(x,y,w,h); cx=x+w/2; cy=y+h/2;
    panelForPoint(cx,cy);
    ownerCode = panelLastOwnerCode;
    coverageCount = panelLastCoverageCount;
    effectiveMatches = panelLastMatchCount;
    effectivePanelId = panelLastId;
    effectiveSource = panelLastSource;
    boundaryCross = 0;
    boundaryOwnerCount = 0;
    boundaryTouchesBackground = 0;
    if (v4RoleForType(spatialType) == "defect") {
        boundaryInfo = split(v51PanelBoundaryInfo(idx), ",");
        if (boundaryInfo.length > 0) boundaryCross = round(parseFloat(boundaryInfo[0]));
        if (boundaryInfo.length > 1) boundaryOwnerCount = round(parseFloat(boundaryInfo[1]));
        if (boundaryInfo.length > 2) boundaryTouchesBackground = round(parseFloat(boundaryInfo[2]));
    }
    safeRoiSelect(idx);
    Roi.setProperty("Panel_id", effectivePanelId);
    Roi.setProperty("Source_filename", effectiveSource);
    Roi.setProperty("Panel_match_count", d2s(effectiveMatches,0));
    Roi.setProperty("Effective_owner_code", d2s(ownerCode,0));
    Roi.setProperty("Geometric_coverage_count", d2s(coverageCount,0));
    Roi.setProperty("Crosses_panel_boundary", d2s(boundaryCross,0));
    Roi.setProperty("Distinct_panel_owners", d2s(boundaryOwnerCount,0));
    Roi.setProperty("Touches_panel_background", d2s(boundaryTouchesBackground,0));
    boundaryReviewed = round(propNumber("Panel_boundary_reviewed",0));
    Roi.setProperty("Panel_boundary_review_required", d2s(boundaryCross && !boundaryReviewed,0));
    if (boundaryCross && !boundaryReviewed) Roi.setProperty("Size_valid", "0");
    localFound = v4LocalCoordinatesForPoint(cx,cy);
    safeRoiSelect(idx);
    if (localFound) {
        Roi.setProperty("X_local_px", d2s(v4LastLocalXpx,6));
        Roi.setProperty("Y_local_px", d2s(v4LastLocalYpx,6));
    } else {
        Roi.setProperty("X_local_px", "NaN");
        Roi.setProperty("Y_local_px", "NaN");
    }
    if (surfaceDefined && computeSurfaceMetrics(cx,cy)) {
        Roi.setProperty("Distance_to_surface_nm", d2s(surfaceLastDistanceNm,6));
        Roi.setProperty("Signed_depth_nm", d2s(surfaceLastSignedDistanceNm,6));
        Roi.setProperty("Absolute_depth_nm", d2s(surfaceLastDistanceNm,6));
        s = surfaceLastArcNm;
        if (v4SurfaceOriginDefined) s = (s-v4SurfaceOriginArcNm)*v4SurfaceTangentialSign;
        Roi.setProperty("Surface_position_nm", d2s(s,6));
        Roi.setProperty("Surface_nearest_x_px", d2s(surfaceLastNearestXpx,6));
        Roi.setProperty("Surface_nearest_y_px", d2s(surfaceLastNearestYpx,6));
        Roi.setProperty("Surface_tangent_angle_deg", d2s(surfaceLastTangentAngleDeg,6));
    }
    Roi.setProperty("Modified_time_ms", d2s(getTime(),0));
    roiManager("update");
}

function v4LocalCoordinatesForPoint(x,y) {
    v4LastLocalXpx=NaN; v4LastLocalYpx=NaN;
    n=roiManager("count"); bestOrder=-1e30; found=0;
    for(pi=0; pi<n; pi++) {
        safeRoiSelect(pi); if(currentRoiType()!="panel") continue;
        if(!Roi.contains(round(x),round(y))) continue;
        order=propNumber("Panel_order",0); if(order<bestOrder) continue;
        Roi.getFloatBounds(px,py,pw,ph); u=x-px; v=y-py;
        sw=propNumber("Source_width_px",pw); sh=propNumber("Source_height_px",ph); rot=round(propNumber("Rotation_deg",0));
        while(rot<0) rot=rot+360; while(rot>=360) rot=rot-360;
        lx=NaN; ly=NaN;
        if(rot==0) { lx=u; ly=v; }
        else if(rot==90) { lx=sw-1-v; ly=u; }
        else if(rot==180) { lx=sw-1-u; ly=sh-1-v; }
        else if(rot==270) { lx=v; ly=sh-1-u; }
        if(!isNaN(lx)&&!isNaN(ly)) { v4LastLocalXpx=lx; v4LastLocalYpx=ly; found=1; bestOrder=order; }
    }
    return found;
}


function v4ReviewSelectedObject() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("revisar la ROI", 1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) { showMessage("Sin ROI", "Seleccione una ROI en el ROI Manager."); return; }
    safeRoiSelect(idx);
    oldId = propString("Object_id", Roi.getName);
    oldSet = propString("ROI_set_id", "");
    oldClass = propString("Object_class", "doubtful");
    oldConfidence = propString("Confidence", "medium");
    oldReview = propString("Review_status", "pending");
    if (oldClass!="confirmed" && oldClass!="doubtful" && oldClass!="possible_artifact" && oldClass!="rejected") oldClass="doubtful";
    if (oldConfidence!="high" && oldConfidence!="medium" && oldConfidence!="low" && oldConfidence!="algorithmic") oldConfidence="medium";
    if (oldReview!="reviewed" && oldReview!="pending") oldReview="pending";
    oldInclude = propNumber("Include_in_statistics", 0);
    oldCount = propNumber("Count_valid", 0);
    oldSize = propNumber("Size_valid", 0);
    oldPosition = propNumber("Position_valid", 1);
    oldBoundaryCross = round(propNumber("Crosses_panel_boundary", 0));
    oldBoundaryReviewed = round(propNumber("Panel_boundary_reviewed", 0));
    if (oldBoundaryCross && !oldBoundaryReviewed) oldSize = 0;
    classes = newArray("confirmed", "doubtful", "possible_artifact", "rejected");
    confidences = newArray("high", "medium", "low", "algorithmic");
    reviews = newArray("reviewed", "pending");
    Dialog.create("Revisar objeto");
    reviewIntro = "Objeto: " + oldId + "\nConjunto: " + oldSet + "\n\nLos candidatos confirmados se transfieren a CAVITIES y conservan Candidate_id.";
    if (oldBoundaryCross) reviewIntro = reviewIntro + "\n\nATENCION: el contorno cruza una frontera efectiva de panel. El recuento pertenece al panel del centroide, pero el tamano solo sera valido si lo confirma aqui tras revisar ambas fuentes.";
    Dialog.addMessage(reviewIntro);
    Dialog.addChoice("Clase:", classes, oldClass);
    Dialog.addChoice("Confianza:", confidences, oldConfidence);
    Dialog.addChoice("Revision:", reviews, oldReview);
    Dialog.addCheckbox("Incluir en estadistica", oldInclude);
    Dialog.addCheckbox("Valido para recuento", oldCount);
    Dialog.addCheckbox("Valido para tamano", oldSize);
    Dialog.addCheckbox("Valido para posicion", oldPosition);
    Dialog.addString("Motivo de exclusion:", propString("Exclusion_reason", ""), 35);
    Dialog.show();
    cls = Dialog.getChoice();
    conf = Dialog.getChoice();
    review = Dialog.getChoice();
    include = Dialog.getCheckbox();
    countValid = Dialog.getCheckbox();
    sizeValid = Dialog.getCheckbox();
    positionValid = Dialog.getCheckbox();
    reason = Dialog.getString();
    if (cls == "possible_artifact" || cls == "rejected") {
        include = 0; countValid = 0; sizeValid = 0;
        if (reason == "") reason = cls;
    }
    if (oldSet == "CAVITY_CANDIDATES" && cls == "confirmed") {
        previousSet = v4ActiveRoiSetId;
        if (v4ReadRoiSet("CAVITIES")) {
            newId = v4NextObjectId(v4ActiveIdPrefix);
            Roi.setProperty("Candidate_id", oldId);
            Roi.setName(newId);
            Roi.setProperty("Object_id", newId);
            Roi.setProperty("ROI_set_id", v4ActiveRoiSetId);
            Roi.setProperty("Object_type", v4ActiveObjectType);
            Roi.setProperty("Geometry", v4ActiveGeometry);
            Roi.setProperty("Scientific_role", v4ActiveScientificRole);
            Roi.setProperty("Measurement_protocol_id", v4ActiveProtocolId);
            v4ApplyActiveStyle();
            oldId = newId;
        }
        v4ReadRoiSet(previousSet);
    }
    Roi.setProperty("Object_class", cls);
    Roi.setProperty("Confidence", conf);
    Roi.setProperty("Review_status", review);
    Roi.setProperty("Include_in_statistics", "" + include);
    Roi.setProperty("Count_valid", "" + countValid);
    Roi.setProperty("Size_valid", "" + sizeValid);
    Roi.setProperty("Position_valid", "" + positionValid);
    if (oldBoundaryCross) {
        boundaryReviewedNow = 0;
        if (review == "reviewed") boundaryReviewedNow = 1;
        Roi.setProperty("Panel_boundary_reviewed", "" + boundaryReviewedNow);
        Roi.setProperty("Panel_boundary_review_required", "" + (1-boundaryReviewedNow));
        if (!boundaryReviewedNow) Roi.setProperty("Size_valid", "0");
    }
    Roi.setProperty("Exclusion_reason", reason);
    Roi.setProperty("Reviewed_by", operatorName);
    Roi.setProperty("Reviewed_time_ms", d2s(getTime(),0));
    Roi.setProperty("Modified_time_ms", d2s(getTime(),0));
    roiManager("update");
    v4RefreshSpatialProperties(idx);
    showStatus("Objeto revisado: " + oldId + " | " + cls);
}

function v4UpgradeSelectedRoi() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("actualizar la ROI", 1)) return;
    run("ROI Manager...");
    idx = roiManager("index");
    if (idx < 0) { showMessage("Sin ROI", "Seleccione una ROI en el ROI Manager."); return; }
    v4UpgradeRoiAtIndex(idx);
    showStatus("ROI actualizada al esquema compatible.");
}

function v4UpgradeAllRois() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("actualizar las ROI", 1)) return;
    run("ROI Manager...");
    n = roiManager("count");
    for (i=0; i<n; i++) v4UpgradeRoiAtIndex(i);
    showStatus("ROIs actualizadas al esquema compatible: " + n);
}

function v4UpgradeRoiAtIndex(idx) {
    if (!safeRoiSelect(idx)) return;
    oldType = currentRoiType();
    objectType = Roi.getProperty("Object_type");
    if (objectType == "") objectType = oldType;
    if (objectType == "") objectType = "unclassified";
    setId = Roi.getProperty("ROI_set_id");
    if (setId == "") setId = v4SetIdForType(objectType);
    prefix = v4PrefixForType(objectType);
    id = Roi.getProperty("Object_id");
    if (id == "") {
        id = objectIdCurrent(oldType);
        if (id == "" || id == "SURFACE_REFERENCE") id = v4NextObjectId(prefix);
    }
    if (objectType == "dislocation_loop" && !startsWith(id, "LOOP_")) id = v4NextObjectId("LOOP");
    uuid = Roi.getProperty("Object_uuid");
    if (uuid == "") uuid = v4Uuid();
    created = Roi.getProperty("Created_time_ms");
    if (created == "") created = d2s(getTime(),0);
    existingProjectId = Roi.getProperty("Project_id");
    if (existingProjectId != "" && existingProjectId != v4ProjectId) {
        Roi.setProperty("Project_mismatch", "1");
        Roi.setProperty("Project_mismatch_expected", v4ProjectId);
        roiManager("update");
        return;
    }
    Roi.setProperty("Object_id", id);
    Roi.setProperty("Object_uuid", uuid);
    Roi.setProperty("ROI_set_id", setId);
    Roi.setProperty("Object_type", objectType);
    Roi.setProperty("Scientific_role", v4RoleForType(objectType));
    Roi.setProperty("Project_id", v4ProjectId);
    Roi.setProperty("Study_id", v4StudyId);
    Roi.setProperty("Sample_id", v4SampleId);
    Roi.setProperty("Specimen_id", v4SpecimenId);
    Roi.setProperty("Acquisition_id", v4AcquisitionId);
    Roi.setProperty("Calibration_id", v4CalibrationId);
    Roi.setProperty("Surface_id", v4SurfaceId);
    if (Roi.getProperty("Measurement_protocol_id") == "") Roi.setProperty("Measurement_protocol_id", v4ProtocolForType(objectType));
    if (Roi.getProperty("Object_class") == "") Roi.setProperty("Object_class", propString("Cavity_class", "confirmed"));
    if (Roi.getProperty("Confidence") == "") Roi.setProperty("Confidence", propString("Cavity_confidence", "high"));
    if (Roi.getProperty("Review_status") == "") Roi.setProperty("Review_status", "pending");
    if (Roi.getProperty("Include_in_statistics") == "") Roi.setProperty("Include_in_statistics", "1");
    if (Roi.getProperty("Count_valid") == "") Roi.setProperty("Count_valid", propString("Include_in_statistics","1"));
    if (Roi.getProperty("Size_valid") == "") {
        sizeFlag = "1";
        if (propNumber("Edge_intersecting",0) > 0) sizeFlag = "0";
        Roi.setProperty("Size_valid", sizeFlag);
    }
    if (Roi.getProperty("Position_valid") == "") Roi.setProperty("Position_valid", propString("Include_in_statistics","1"));
    Roi.setProperty("Created_time_ms", created);
    Roi.setProperty("Modified_time_ms", d2s(getTime(),0));
    Roi.setProperty("Tool_version", v4ToolVersion);
    if (objectType == "dislocation_loop") {
        subtype = Roi.getProperty("Object_subtype");
        if (subtype == "") subtype = v4LoopSubtypeForCurrentSelection();
        Roi.setProperty("Object_subtype", subtype);
        Roi.setProperty("Type", "dislocation_loop");
        Roi.setProperty("Feature_id", id);
        Roi.setName(v4VisibleLoopName(id, subtype));
    }
    v4SetGeometryProperties();
    roiManager("update");
    v4RefreshSpatialProperties(idx);
}

function v4SetIdForType(t) {
    if (t == "cavity") return "CAVITIES";
    if (t == "dislocation_loop") return "LOOPS";
    if (t == "precipitate") return "PRECIPITATES";
    if (t == "dislocation") return "DISLOCATIONS";
    if (t == "grain_boundary") return "GRAIN_BOUNDARIES";
    if (t == "interface") return "INTERFACES";
    if (t == "panel") return "PANELS";
    if (t == "analysis_mask") return "ANALYSIS_MASKS";
    if (t == "exclusion") return "EXCLUSIONS";
    if (t == "surface_reference") return "SURFACES";
    return "UNCLASSIFIED";
}

function v4PrefixForType(t) {
    if (t == "cavity") return "CAV";
    if (t == "dislocation_loop") return "LOOP";
    if (t == "precipitate") return "PPT";
    if (t == "dislocation") return "DIS";
    if (t == "grain_boundary") return "GB";
    if (t == "interface") return "INT";
    if (t == "panel") return "PANEL";
    if (t == "analysis_mask") return "MASK";
    if (t == "exclusion") return "EXCL";
    if (t == "surface_reference") return "SURF";
    return "OBJ";
}

function v4RoleForType(t) {
    if (t == "panel" || t == "analysis_mask" || t == "exclusion") return "region";
    if (t == "surface_reference" || t == "grain_boundary" || t == "interface") return "reference_feature";
    if (t == "dislocation") return "line_feature";
    return "defect";
}

function v4ProtocolForType(t) {
    if (t == "cavity") return "CAVITY_MANUAL_V1";
    if (t == "dislocation") return "DISLOCATION_TRACE_V1";
    if (t == "dislocation_loop") return "LOOP_MANUAL_V1";
    if (t == "precipitate") return "PARTICLE_MANUAL_V1";
    return "REFERENCE_OR_REGION_V1";
}

function v4DefineSurfaceComplete() {
    if (!v4PrepareImageForMeasurement(1)) return;
    defineSurfaceReference();
    if (!surfaceDefined) return;
    v4DefineSurfaceOrigin();
}

function v4DefineSurfaceOrigin() {
    if (!v4PrepareImageForMeasurement(1)) return;
    if (!surfaceDefined) loadSurfaceReferenceFromRois();
    if (!surfaceDefined) { showMessage("Sin superficie", "Defina primero la superficie y el lado del material."); return; }
    setTool("point");
    if (!waitForUserSafe("Definir origen s=0", "Haga click sobre, o muy cerca de, la superficie en el punto que sera s=0.\nPulse OK despues del click.")) return;
    if (selectionType != 10) { showMessage("Origen no definido", "La seleccion debe ser un punto."); return; }
    getSelectionCoordinates(px,py);
    if (px.length < 1 || !computeSurfaceMetrics(px[0],py[0])) return;
    arc = surfaceLastArcNm;
    nearestX = surfaceLastNearestXpx; nearestY = surfaceLastNearestYpx;
    Dialog.create("Sentido de la coordenada superficial");
    Dialog.addChoice("Sentido positivo de s:", newArray("Desde el primer vertice hacia el ultimo", "Desde el ultimo vertice hacia el primero"), "Desde el primer vertice hacia el ultimo");
    Dialog.show();
    direction = Dialog.getChoice();
    sign = 1; if (direction == "Desde el ultimo vertice hacia el primero") sign = -1;
    v4SurfaceOriginDefined = 1;
    v4SurfaceOriginArcNm = arc;
    v4SurfaceOriginXpx = nearestX;
    v4SurfaceOriginYpx = nearestY;
    v4SurfaceTangentialSign = sign;
    idx = findSurfaceReferenceIndex();
    if (idx >= 0) {
        safeRoiSelect(idx);
        Roi.setProperty("Surface_id", v4SurfaceId);
        Roi.setProperty("Origin_defined", "1");
        Roi.setProperty("Origin_arc_nm", d2s(arc,6));
        Roi.setProperty("Origin_x_px", d2s(nearestX,6));
        Roi.setProperty("Origin_y_px", d2s(nearestY,6));
        Roi.setProperty("Tangential_sign", d2s(sign,0));
        Roi.setProperty("Project_id", v4ProjectId);
        roiManager("update");
    }
    v4PersistSurfaceState();
    v4UpgradeAllRois();
    showStatus("Origen s=0 definido para " + v4SurfaceId);
}

function v4PersistSurfaceState() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("guardar la superficie", 1)) return;
    if (!surfaceDefined) loadSurfaceReferenceFromRois();
    if (!surfaceDefined) return;
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "guardar el estado de superficie", 1)) return;
    refs = projectAwareJoinPath(v4ProjectDir, "references"); makeDirIfMissing(refs);
    geometryName = "surface_geometry_" + v4SurfaceId + ".csv";
    geometryPath = projectAwareJoinPath(refs, geometryName);
    geom = "surface_id,point_index,x_px,y_px,x_nm,y_nm\n";
    for (i=0; i<surfaceX.length; i++) {
        geom = geom + projectAwareCsvEscape(v4SurfaceId) + "," + i + "," + d2s(surfaceX[i],6) + "," + d2s(surfaceY[i],6) + "," + d2s(surfaceX[i]*nmPerPixelX,6) + "," + d2s(surfaceY[i]*nmPerPixelY,6) + "\n";
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar la geometria de superficie", 1)) return;
    File.saveString(geom, geometryPath);
    statePath = projectAwareJoinPath(refs, "surface_state_from_fiji.csv");
    state = "surface_id,geometry_file,origin_defined,origin_arc_nm,origin_x_px,origin_y_px,tangential_sign,side_defined,material_side_sign,material_point_x_px,material_point_y_px,point_count,updated_time_ms\n";
    state = state + projectAwareCsvEscape(v4SurfaceId) + "," + projectAwareCsvEscape("references/"+geometryName) + "," + v4SurfaceOriginDefined + "," + d2s(v4SurfaceOriginArcNm,6) + "," + d2s(v4SurfaceOriginXpx,6) + "," + d2s(v4SurfaceOriginYpx,6) + "," + v4SurfaceTangentialSign + "," + surfaceSideDefined + "," + surfaceMaterialSign + "," + d2s(surfaceMaterialX,6) + "," + d2s(surfaceMaterialY,6) + "," + surfaceX.length + "," + d2s(getTime(),0) + "\n";
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar el estado de superficie", 1)) return;
    File.saveString(state, statePath);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de guardar la superficie", 1)) return;
}

function v4LoadSurfaceStateFromBridge() {
    if (!v4ProjectLoaded) return;
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "leer el estado de superficie", 1)) return;
    surfacesPath = v4ResolvePath(v4Field("surfaces_csv"));
    if (surfacesPath == "") surfacesPath = projectAwareJoinPath(v4BridgeStaticDir, "surfaces.csv");
    if (!File.exists(surfacesPath)) return;
    text = File.openAsString(surfacesPath); lines = split(text,"\n");
    for (i=1; i<lines.length; i++) {
        line=replace(lines[i],"\r",""); if (line=="") continue;
        c=split(line,","); if (c.length<10) continue;
        id=projectAwareCleanCsvValue(c[0]); if (id!=v4SurfaceId) continue;
        nextOriginDefined = parseFloat(projectAwareCleanCsvValue(c[4]));
        nextOriginArcNm = parseFloat(projectAwareCleanCsvValue(c[5]));
        nextOriginXpx = parseFloat(projectAwareCleanCsvValue(c[6]));
        nextOriginYpx = parseFloat(projectAwareCleanCsvValue(c[7]));
        nextTangentialSign = parseFloat(projectAwareCleanCsvValue(c[8]));
        if (isNaN(nextTangentialSign) || nextTangentialSign==0) nextTangentialSign=1;
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "leer el estado de superficie", 1)) return;
        previousOriginDefined = v4SurfaceOriginDefined;
        previousOriginArcNm = v4SurfaceOriginArcNm;
        previousOriginXpx = v4SurfaceOriginXpx;
        previousOriginYpx = v4SurfaceOriginYpx;
        previousTangentialSign = v4SurfaceTangentialSign;
        v4SurfaceOriginDefined = nextOriginDefined;
        v4SurfaceOriginArcNm = nextOriginArcNm;
        v4SurfaceOriginXpx = nextOriginXpx;
        v4SurfaceOriginYpx = nextOriginYpx;
        v4SurfaceTangentialSign = nextTangentialSign;
        if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar el estado de superficie", 1)) {
            v4SurfaceOriginDefined = previousOriginDefined;
            v4SurfaceOriginArcNm = previousOriginArcNm;
            v4SurfaceOriginXpx = previousOriginXpx;
            v4SurfaceOriginYpx = previousOriginYpx;
            v4SurfaceTangentialSign = previousTangentialSign;
            return;
        }
        return;
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de leer el estado de superficie", 1)) return;
}

function v4ShowObjectTable() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("mostrar la tabla cuantitativa", 1)) return;
    run("ROI Manager...");
    n = roiManager("count");
    run("Clear Results");
    row=0;
    for (i=0; i<n; i++) {
        safeRoiSelect(i);
        t=Roi.getProperty("Object_type"); if (t=="") t=currentRoiType();
        if (t=="session_metadata" || t=="scale_label") continue;
        id=Roi.getProperty("Object_id"); if (id=="") id=objectIdCurrent(currentRoiType());
        setResult("ROI",row,i);
        setResult("Object ID",row,id);
        setResult("Set",row,Roi.getProperty("ROI_set_id"));
        setResult("Type",row,t);
        setResult("Class",row,propString("Object_class",propString("Cavity_class","")));
        setResult("Review",row,propString("Review_status",""));
        setResult("Included",row,propNumber("Include_in_statistics",1));
        setResult("Size (nm)",row,propNumber("Equivalent_diameter_nm",propNumber("Diameter_nm",NaN)));
        setResult("Depth (nm)",row,propNumber("Signed_depth_nm",propNumber("Depth_nm",NaN)));
        setResult("s (nm)",row,propNumber("Surface_position_nm",NaN));
        setResult("Panel",row,propString("Panel_id",""));
        row++;
    }
    updateResults();
    showStatus("Tabla creada. La columna ROI permite localizar el indice en ROI Manager.");
}

function v51RemoveOverlayPrefix(prefix) {
    if (nImages() <= 0) return 0;
    js = "var imp=Packages.ij.IJ.getImage(),removed=0,ov=imp==null?null:imp.getOverlay();if(ov!=null){for(var i=ov.size()-1;i>=0;i--){var r=ov.get(i),n=r==null?null:r.getName();if(n!=null&&String(n).indexOf('" + jsEscape(prefix) + "')==0){ov.remove(i);removed++;}}imp.setOverlay(ov);imp.updateAndDraw();}String(removed);";
    removed = round(parseFloat("" + eval("js", js)));
    showStatus("Ayudas visuales retiradas del overlay: " + removed + ". Los pixeles no se modificaron.");
    return removed;
}

function v51ConfigureScaleBarOverlay() {
    if (nImages() <= 0) { showMessage("Barra de escala", "Abra primero una imagen calibrada."); return; }
    if (!updateScaleMaybe()) { showMessage("Barra de escala", "La imagen no tiene calibracion fisica valida."); return; }
    positions = newArray("Abajo derecha", "Abajo izquierda", "Arriba derecha", "Arriba izquierda");
    Dialog.create("Barra de escala visual - overlay no destructivo");
    Dialog.addMessage("La barra usa la calibracion ya conciliada. Es solo una ayuda visual: no crea una referencia cientifica ni cambia los pixeles.");
    Dialog.addNumber("Longitud (nm):", v51ScaleBarLengthNm);
    Dialog.addChoice("Posicion:", positions, v51ScaleBarPosition);
    Dialog.addString("Color barra/texto (#RRGGBB):", v51ScaleBarColor, 10);
    Dialog.addString("Color fondo (#RRGGBB):", v51ScaleBarBackground, 10);
    Dialog.addNumber("Opacidad fondo (0-255):", v51ScaleBarBackgroundAlpha);
    Dialog.addNumber("Grosor barra (px de imagen):", v51ScaleBarThicknessPx);
    Dialog.addNumber("Tamano texto (px):", v51ScaleBarFontPx);
    Dialog.addNumber("Margen (px):", v51ScaleBarMarginPx);
    Dialog.show();
    v51ScaleBarLengthNm = Dialog.getNumber();
    v51ScaleBarPosition = Dialog.getChoice();
    v51ScaleBarColor = Dialog.getString();
    v51ScaleBarBackground = Dialog.getString();
    v51ScaleBarBackgroundAlpha = round(Dialog.getNumber());
    v51ScaleBarThicknessPx = round(Dialog.getNumber());
    v51ScaleBarFontPx = round(Dialog.getNumber());
    v51ScaleBarMarginPx = round(Dialog.getNumber());
    if (v51ScaleBarLengthNm <= 0) { showMessage("Valor no valido", "La longitud debe ser mayor que cero."); return; }
    if (v51ScaleBarBackgroundAlpha < 0) v51ScaleBarBackgroundAlpha = 0;
    if (v51ScaleBarBackgroundAlpha > 255) v51ScaleBarBackgroundAlpha = 255;
    if (v51ScaleBarThicknessPx < 1) v51ScaleBarThicknessPx = 1;
    if (v51ScaleBarFontPx < 8) v51ScaleBarFontPx = 8;
    if (v51ScaleBarMarginPx < 0) v51ScaleBarMarginPx = 0;
    v51RenderScaleBarOverlay();
}

function v51RenderScaleBarOverlay() {
    if (nImages() <= 0 || !updateScaleMaybe()) return 0;
    barPx = v51ScaleBarLengthNm/nmPerPixelX;
    if (barPx < 1 || barPx > getWidth()-2*v51ScaleBarMarginPx) {
        showMessage("Barra fuera de rango", "La longitud elegida equivale a " + d2s(barPx,1) + " px y no cabe con el margen actual.");
        return 0;
    }
    label = d2s(v51ScaleBarLengthNm,0) + " nm";
    if (v51ScaleBarLengthNm >= 1000) label = d2s(v51ScaleBarLengthNm/1000.0,2) + " um";
    js = "var IJ=Packages.ij.IJ,Overlay=Packages.ij.gui.Overlay,Roi=Packages.ij.gui.Roi,TextRoi=Packages.ij.gui.TextRoi,Color=Packages.java.awt.Color,Font=Packages.java.awt.Font;var imp=IJ.getImage(),OUT='ERROR';try{var ov=imp.getOverlay();if(ov==null)ov=new Overlay();for(var i=ov.size()-1;i>=0;i--){var old=ov.get(i),nm=old==null?null:old.getName();if(nm!=null&&String(nm).indexOf('CAVITY_SCALE_')==0)ov.remove(i);}function color(hex,a){var c=Color.decode(String(hex));return new Color(c.getRed(),c.getGreen(),c.getBlue(),a);}var barW=Math.max(1,Math.round(" + d2s(barPx,6) + ")),th=" + v51ScaleBarThicknessPx + ",fontPx=" + v51ScaleBarFontPx + ",margin=" + v51ScaleBarMarginPx + ",label='" + jsEscape(label) + "',approx=Math.round(label.length*fontPx*0.64),boxW=Math.max(barW,approx)+20,boxH=th+fontPx+22,w=imp.getWidth(),h=imp.getHeight(),pos='" + jsEscape(v51ScaleBarPosition) + "',x=margin,y=h-margin-boxH;if(pos.indexOf('izquierda')>=0)x=margin;else x=w-margin-boxW;if(pos.indexOf('Arriba')==0)y=margin;x=Math.max(0,Math.min(w-boxW,x));y=Math.max(0,Math.min(h-boxH,y));var bg=new Roi(x,y,boxW,boxH);bg.setName('CAVITY_SCALE_BACKGROUND');bg.setFillColor(color('" + jsEscape(v51ScaleBarBackground) + "'," + v51ScaleBarBackgroundAlpha + "));bg.setStrokeColor(null);ov.add(bg);var bx=x+10+(boxW-barW-20)/2,by=y+boxH-th-10;var bar=new Roi(Math.round(bx),Math.round(by),barW,th);bar.setName('CAVITY_SCALE_BAR');bar.setFillColor(color('" + jsEscape(v51ScaleBarColor) + "',255));bar.setStrokeColor(null);ov.add(bar);var text=new TextRoi(Math.round(x+(boxW-approx)/2),Math.round(y+2),label,new Font('SansSerif',Font.PLAIN,fontPx));text.setName('CAVITY_SCALE_TEXT');text.setStrokeColor(color('" + jsEscape(v51ScaleBarColor) + "',255));ov.add(text);imp.setOverlay(ov);imp.updateAndDraw();OUT='OK|'+barW;}catch(ex){OUT='ERROR|'+String(ex);}String(OUT);";
    result = "" + eval("js", js);
    if (!startsWith(result,"OK|")) { showMessage("Barra no creada", result); return 0; }
    showStatus("Barra visual anadida al overlay: " + label + ". Pixeles intactos.");
    return 1;
}

function v51ConfigureSurfaceGuides() {
    if (nImages() <= 0) { showMessage("Guias paralelas", "Abra primero una imagen calibrada."); return; }
    if (!updateScaleMaybe()) { showMessage("Guias paralelas", "La imagen no tiene calibracion fisica valida."); return; }
    if (!surfaceDefined) loadSurfaceReferenceFromRois();
    if (!surfaceDefined) { showMessage("Guias paralelas", "Defina primero la superficie y el lado del material."); return; }
    Dialog.create("Guias paralelas a la superficie - overlay");
    Dialog.addMessage("Se crean offsets visuales aproximados de la polilinea de superficie en unidades fisicas. No se anaden al ROI Manager ni entran en los calculos.");
    Dialog.addNumber("Separacion (nm):", v51GuideSpacingNm);
    Dialog.addNumber("Distancia maxima (nm):", v51GuideMaximumNm);
    Dialog.addString("Color (#RRGGBB):", v51GuideColor, 10);
    Dialog.addNumber("Grosor (px de imagen):", v51GuideWidthPx);
    Dialog.addCheckbox("Linea discontinua", v51GuideDashed);
    Dialog.addCheckbox("Mostrar tambien el lado opuesto", v51GuideBothSides);
    Dialog.addCheckbox("Mostrar distancias", v51GuideLabels);
    Dialog.show();
    v51GuideSpacingNm = Dialog.getNumber();
    v51GuideMaximumNm = Dialog.getNumber();
    v51GuideColor = Dialog.getString();
    v51GuideWidthPx = Dialog.getNumber();
    v51GuideDashed = Dialog.getCheckbox();
    v51GuideBothSides = Dialog.getCheckbox();
    v51GuideLabels = Dialog.getCheckbox();
    if (v51GuideSpacingNm <= 0 || v51GuideMaximumNm < v51GuideSpacingNm) { showMessage("Valores no validos", "La separacion debe ser positiva y la distancia maxima debe ser igual o mayor."); return; }
    if (v51GuideMaximumNm/v51GuideSpacingNm > 200) { showMessage("Demasiadas guias", "Configure como maximo 200 lineas por lado para mantener Fiji fluido."); return; }
    if (v51GuideWidthPx < 0.5) v51GuideWidthPx = 0.5;
    v51RenderSurfaceGuides();
}

function v51RenderSurfaceGuides() {
    if (nImages() <= 0 || !updateScaleMaybe()) return 0;
    if (!surfaceDefined) loadSurfaceReferenceFromRois();
    if (!surfaceDefined) return 0;
    js = "var IJ=Packages.ij.IJ,RM=Packages.ij.plugin.frame.RoiManager,Overlay=Packages.ij.gui.Overlay,Roi=Packages.ij.gui.Roi,PolygonRoi=Packages.ij.gui.PolygonRoi,TextRoi=Packages.ij.gui.TextRoi,Color=Packages.java.awt.Color,Font=Packages.java.awt.Font,BasicStroke=Packages.java.awt.BasicStroke,Reflect=Packages.java.lang.reflect.Array,FloatType=Packages.java.lang.Float.TYPE;var imp=IJ.getImage(),OUT='ERROR';try{var rm=RM.getInstance2(),surface=null,rois=rm==null?[]:rm.getRoisAsArray();function typ(r){var t=r.getProperty('Object_type');if(t==null||String(t)=='')t=r.getProperty('Type');return t==null?'':String(t);}for(var r=0;r<rois.length;r++){var t=typ(rois[r]),n=String(rois[r].getName());if(t=='surface_reference'||t=='surface'||n.indexOf('SURFACE_REFERENCE')==0){surface=rois[r];break;}}if(surface==null){OUT='ERROR|surface_missing';}else{var fp=surface.getFloatPolygon(),count=fp.npoints;if(count<2){OUT='ERROR|surface_too_short';}else{var ov=imp.getOverlay();if(ov==null)ov=new Overlay();for(var oi=ov.size()-1;oi>=0;oi--){var old=ov.get(oi),on=old==null?null:old.getName();if(on!=null&&String(on).indexOf('CAVITY_GUIDE_')==0)ov.remove(oi);}var base=Color.decode('" + jsEscape(v51GuideColor) + "'),sx=" + d2s(nmPerPixelX,12) + ",sy=" + d2s(nmPerPixelY,12) + ",spacing=" + d2s(v51GuideSpacingNm,9) + ",maximum=" + d2s(v51GuideMaximumNm,9) + ",materialSign=" + d2s(surfaceMaterialSign,0) + ",both=" + d2s(v51GuideBothSides,0) + ",dashed=" + d2s(v51GuideDashed,0) + ",labels=" + d2s(v51GuideLabels,0) + ",width=" + d2s(v51GuideWidthPx,3) + ",made=0;var sides=both?[materialSign,-materialSign]:[materialSign];for(var si=0;si<sides.length;si++){var sign=sides[si];for(var dist=spacing;dist<=maximum+spacing*1e-9;dist+=spacing){var xp=Reflect.newInstance(FloatType,count),yp=Reflect.newInstance(FloatType,count);for(var p=0;p<count;p++){var p0=Math.max(0,p-1),p1=Math.min(count-1,p+1),dx=(fp.xpoints[p1]-fp.xpoints[p0])*sx,dy=(fp.ypoints[p1]-fp.ypoints[p0])*sy,len=Math.sqrt(dx*dx+dy*dy);if(len<=0){dx=1;dy=0;len=1;}var nx=-dy/len,ny=dx/len;xp[p]=fp.xpoints[p]+sign*dist*nx/sx;yp[p]=fp.ypoints[p]+sign*dist*ny/sy;}var line=new PolygonRoi(xp,yp,count,Roi.POLYLINE);line.setName('CAVITY_GUIDE_'+si+'_'+Math.round(dist)+'NM');line.setStrokeColor(base);line.setStrokeWidth(width);if(dashed){try{var dash=Reflect.newInstance(FloatType,2);dash[0]=10;dash[1]=7;line.setStroke(new BasicStroke(width,BasicStroke.CAP_BUTT,BasicStroke.JOIN_ROUND,10,dash,0));line.setStrokeColor(base);}catch(ignore){}}ov.add(line);if(labels){var mid=Math.floor(count/2),txt=new TextRoi(Math.round(xp[mid]+4),Math.round(yp[mid]+4),Math.round(dist)+' nm',new Font('SansSerif',Font.PLAIN,14));txt.setName('CAVITY_GUIDE_LABEL_'+si+'_'+Math.round(dist)+'NM');txt.setStrokeColor(base);ov.add(txt);}made++;}}imp.setOverlay(ov);imp.updateAndDraw();OUT='OK|'+made;}}}}catch(ex){OUT='ERROR|'+String(ex);}String(OUT);";
    result = "" + eval("js", js);
    if (!startsWith(result,"OK|")) { showMessage("Guias no creadas", result); return 0; }
    showStatus("Guias paralelas anadidas al overlay (" + substring(result,3) + "). Pixeles y ROIs cientificas intactos.");
    return 1;
}

function v51ActiveImageIsRegisteredMaster(verbose) {
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "comprobar el maestro registrado", verbose)) return 0;
    if (v4MasterImage == "" || !File.exists(v4MasterImage)) {
        if (verbose) showMessage("Area no disponible", "El proyecto no tiene un maestro registrado y disponible. Vuelva a Studio y construya o abra el OME-TIFF certificado.");
        return 0;
    }
    wantedMasterPath = normalizeStoredPath(v4MasterImage);
    activeMasterPath = v4CurrentImageCanonicalPath();
    if (activeMasterPath == "" || activeMasterPath != wantedMasterPath) {
        if (verbose) showMessage("Imagen incorrecta para el area", "El area solo se calcula sobre el maestro registrado exacto, nunca sobre una copia filtrada o una ventana con el mismo tamano.\n\nMaestro esperado:\n" + wantedMasterPath + "\n\nImagen activa:\n" + activeMasterPath + "\n\nUse Abrir o activar montaje maestro y vuelva a intentarlo.");
        return 0;
    }
    return 1;
}

function v51ComputeAndSaveExactValidArea(verbose) {
    // Exact, non-sampled denominator:
    //   ownership > 0 AND optional inclusion union AND NOT exclusion union.
    // The ownership raster already resolves SVG overlap by certified z-order,
    // therefore every valid montage pixel belongs to at most one panel.
    v51LastExactAreaCsv = "";
    v51LastExactAreaMethod = "not_calculated";
    if (!v4EnsureProject()) return 0;
    if (!v4RequireCurrentRevisionBinding("calcular el area valida", verbose)) return 0;
    if (nImages() <= 0) { if (verbose) showMessage("Area exacta", "Abra la imagen maestra del proyecto."); return 0; }
    if (!v51ActiveImageIsRegisteredMaster(verbose)) return 0;
    if (!v4ScaleMeasurementAllowed || !v4CheckImageScaleAgainstProject(0) || !updateScaleMaybe()) {
        if (verbose) showMessage("Area exacta no disponible", "La calibracion de proyecto no esta conciliada con la imagen activa.");
        return 0;
    }
    if (!v4OwnershipCertified || !v4PanelQuantitativeReady || v4OwnershipImage == "" || !File.exists(v4OwnershipImage)) {
        if (verbose) {
            useFallback = getBoolean("No hay panel_ownership.ome.tif certificado.\n\nPuede intentar detectar automaticamente solo el fondo negro (valor 0) conectado al borde. El negro interior se conserva como area. El resultado quedara marcado como FALLBACK NO CERTIFICADO y no ofrecera desglose fiable por panel.\n\nUsar este fallback ahora?", "Usar fondo negro", "Cancelar");
            if (useFallback) return v51ComputeBlackBackgroundFallback(1);
            showMessage("Area exacta no disponible", "Reconstruya o actualice el montaje en Studio para obtener ownership certificado. El fallback negro nunca sustituye silenciosamente esa evidencia.");
        }
        return 0;
    }
    run("ROI Manager...");
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "leer el ownership para el area exacta", verbose)) return 0;
    showStatus("Calculando area exacta: ownership, inclusion opcional y exclusiones...");
    js = "var IJ=Packages.ij.IJ,RM=Packages.ij.plugin.frame.RoiManager,BP=Packages.ij.process.ByteProcessor;var OUT='ERROR|unknown',owner=null;";
    js = js + "try{var active=IJ.getImage();owner=IJ.openImage('" + jsEscape(v4OwnershipImage) + "');if(active==null||owner==null){OUT='ERROR|image_missing';}else if(active.getWidth()!=owner.getWidth()||active.getHeight()!=owner.getHeight()){OUT='ERROR|dimension_mismatch|'+active.getWidth()+'x'+active.getHeight()+'|'+owner.getWidth()+'x'+owner.getHeight();}else{";
    js = js + "var w=owner.getWidth(),h=owner.getHeight(),n=w*h,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),masks=[],exclusions=[];function typ(r){var t=r.getProperty('Object_type');if(t==null||String(t)=='')t=r.getProperty('Type');return t==null?'':String(t);}";
    js = js + "for(var r=0;r<rois.length;r++){var t=typ(rois[r]);if(t=='analysis_mask')masks.push(rois[r]);else if(t=='exclusion')exclusions.push(rois[r]);}function paint(bp,roi,value){bp.setValue(value);bp.fill(roi);}";
    js = js + "var inc=new BP(w,h),exc=new BP(w,h),maskApplied=masks.length>0;if(maskApplied){for(var a=0;a<masks.length;a++)paint(inc,masks[a],255);}else{inc.setValue(255);inc.fill();}for(var e=0;e<exclusions.length;e++)paint(exc,exclusions[e],255);";
    js = js + "var op=owner.getProcessor(),pix=op.getPixels(),ipix=inc.getPixels(),epix=exc.getPixels(),bits=owner.getBitDepth(),by={},coverage=0,outside=0,excluded=0,valid=0;for(var i=0;i<n;i++){var code=Number(pix[i]);if(code<0&&bits==8)code+=256;else if(code<0&&bits==16)code+=65536;code=Math.round(code);if(code<=0)continue;coverage++;var row=by[code];if(row==null){row=[0,0,0,0];by[code]=row;}row[0]++;if(ipix[i]==0){outside++;row[1]++;}else if(epix[i]!=0){excluded++;row[2]++;}else{valid++;row[3]++;}}";
    js = js + "var keys=[];for(var k in by)if(by.hasOwnProperty(k))keys.push(parseInt(k,10));keys.sort(function(a,b){return a-b;});var rows=[];for(var q=0;q<keys.length;q++){var c=keys[q],z=by[c];rows.push(c+':'+z[0]+':'+z[1]+':'+z[2]+':'+z[3]);}OUT='OK|'+w+'|'+h+'|'+coverage+'|'+outside+'|'+excluded+'|'+valid+'|'+(maskApplied?1:0)+'|'+(rows.length?rows.join(';'):'NONE');}}catch(ex){OUT='ERROR|'+String(ex);}finally{try{if(owner!=null){owner.changes=false;owner.close();}}catch(ignore){}}String(OUT);";
    result = "" + eval("js", js);
    parts = split(result, "|");
    if (parts.length < 9 || parts[0] != "OK") {
        if (verbose) showMessage("Area exacta no calculada", "No se modifico ninguna imagen.\n\nDetalle: " + result);
        showStatus("Area exacta no calculada: " + result);
        return 0;
    }
    coveragePixels = parseFloat(parts[3]);
    outsidePixels = parseFloat(parts[4]);
    excludedPixels = parseFloat(parts[5]);
    validPixels = parseFloat(parts[6]);
    inclusionApplied = round(parseFloat(parts[7]));
    pixelAreaNm2 = nmPerPixelX*nmPerPixelY;
    lastValidAreaNm2 = validPixels*pixelAreaNm2;
    generatedTime = d2s(getTime(),0);
    method = "ownership_exact_svg_z_order_intersect_optional_inclusion_minus_exclusions";
    csv = "project_id,revision_id,current_montage_pointer_sha256,master_revision_manifest_sha256,master_native_plan_sha256,master_sha256,master_ownership_sha256,panel_id,owner_code,valid_pixel_count,valid_area_nm2,valid_area_um2,method,coverage_pixel_count,outside_inclusion_pixel_count,excluded_pixel_count,inclusion_mask_applied,ownership_image,ownership_certified,generated_time_ms\n";
    ownerRows = parts[8];
    if (ownerRows != "NONE") {
        encodedRows = split(ownerRows, ";");
        for (ar=0; ar<encodedRows.length; ar++) {
            fields = split(encodedRows[ar], ":");
            if (fields.length < 5) continue;
            code = round(parseFloat(fields[0]));
            panelCoverage = parseFloat(fields[1]);
            panelOutside = parseFloat(fields[2]);
            panelExcluded = parseFloat(fields[3]);
            panelValid = parseFloat(fields[4]);
            panelId = v51PanelIdForOwnerCode(code);
            if (panelId == "") panelId = "OWNER_" + code;
            panelAreaNm2 = panelValid*pixelAreaNm2;
            csv = csv + projectAwareCsvEscape(v4ProjectId) + "," + projectAwareCsvEscape(v4MasterRevisionId) + "," + projectAwareCsvEscape(v4CurrentMontagePointerSha256) + "," + projectAwareCsvEscape(v4MasterRevisionManifestSha256) + "," + projectAwareCsvEscape(v4MasterNativePlanSha256) + "," + projectAwareCsvEscape(v4MasterSha256) + "," + projectAwareCsvEscape(v4MasterOwnershipSha256) + "," + projectAwareCsvEscape(panelId) + "," + code + "," + d2s(panelValid,0) + "," + d2s(panelAreaNm2,9) + "," + d2s(panelAreaNm2/1000000.0,12) + "," + projectAwareCsvEscape(method) + "," + d2s(panelCoverage,0) + "," + d2s(panelOutside,0) + "," + d2s(panelExcluded,0) + "," + inclusionApplied + "," + projectAwareCsvEscape(v4OwnershipImage) + ",1," + generatedTime + "\n";
        }
    }
    csv = csv + projectAwareCsvEscape(v4ProjectId) + "," + projectAwareCsvEscape(v4MasterRevisionId) + "," + projectAwareCsvEscape(v4CurrentMontagePointerSha256) + "," + projectAwareCsvEscape(v4MasterRevisionManifestSha256) + "," + projectAwareCsvEscape(v4MasterNativePlanSha256) + "," + projectAwareCsvEscape(v4MasterSha256) + "," + projectAwareCsvEscape(v4MasterOwnershipSha256) + ",__TOTAL__,0," + d2s(validPixels,0) + "," + d2s(lastValidAreaNm2,9) + "," + d2s(lastValidAreaNm2/1000000.0,12) + "," + projectAwareCsvEscape(method) + "," + d2s(coveragePixels,0) + "," + d2s(outsidePixels,0) + "," + d2s(excludedPixels,0) + "," + inclusionApplied + "," + projectAwareCsvEscape(v4OwnershipImage) + ",1," + generatedTime + "\n";
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar el area exacta", verbose)) return 0;
    exportsDir = projectAwareJoinPath(v4ProjectDir, "exports");
    makeDirIfMissing(exportsDir);
    v51LastExactAreaCsv = projectAwareJoinPath(exportsDir, "valid_area_by_panel.csv");
    File.saveString(csv, v51LastExactAreaCsv);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de publicar el area exacta", verbose)) return 0;
    v51LastExactAreaMethod = method;
    showStatus("Area valida exacta: " + d2s(lastValidAreaNm2,3) + " nm^2 (sin doble conteo).");
    if (verbose) showMessage("Area valida exacta", "Cobertura SVG/ownership: " + d2s(coveragePixels,0) + " px\nFuera de inclusion opcional: " + d2s(outsidePixels,0) + " px\nExcluidos: " + d2s(excludedPixels,0) + " px\nValidos: " + d2s(validPixels,0) + " px\n\nArea valida: " + d2s(lastValidAreaNm2,3) + " nm^2\n\n" + v51LastExactAreaCsv);
    return 1;
}

function v51PanelIdForOwnerCode(code) {
    run("ROI Manager...");
    selected = roiManager("index");
    found = "";
    n = roiManager("count");
    for (pi=0; pi<n; pi++) {
        if (!safeRoiSelect(pi)) continue;
        if (currentRoiType() == "panel" && round(propNumber("Owner_code",0)) == code) {
            found = propString("Panel_id", Roi.getName);
            break;
        }
    }
    if (selected >= 0 && selected < n) safeRoiSelect(selected);
    return "" + found;
}

function v51ComputeBlackBackgroundFallback(verbose) {
    // Explicit compatibility fallback for old projects only. A 4-connected
    // FloodFiller marks exactly the zero-valued background reachable from the
    // image border; enclosed black detail remains valid material.
    if (!v4EnsureProject() || nImages() <= 0) return 0;
    if (!v4RequireCurrentRevisionBinding("calcular el area fallback", verbose)) return 0;
    if (!v51ActiveImageIsRegisteredMaster(verbose) || !updateScaleMaybe()) return 0;
    if (v4OwnershipCertified && v4OwnershipImage != "" && File.exists(v4OwnershipImage)) {
        if (verbose) showMessage("Fallback no usado", "Existe ownership certificado. Use Calcular area exacta para conservar la propiedad por panel.");
        return 0;
    }
    run("ROI Manager...");
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "calcular el area fallback", verbose)) return 0;
    showStatus("Detectando fondo negro conectado al borde (fallback no certificado)...");
    js = "var IJ=Packages.ij.IJ,RM=Packages.ij.plugin.frame.RoiManager,BP=Packages.ij.process.ByteProcessor,FF=Packages.ij.process.FloodFiller;var OUT='ERROR';try{var imp=IJ.getImage(),w=imp.getWidth(),h=imp.getHeight(),n=w*h,src=imp.getProcessor().getPixels(),black=new BP(w,h),bp=black.getPixels();for(var i=0;i<n;i++)bp[i]=(Number(src[i])==0)?255:0;black.setValue(128);var flood=new FF(black);for(var x=0;x<w;x++){if(black.get(x,0)==255)flood.fill(x,0);if(h>1&&black.get(x,h-1)==255)flood.fill(x,h-1);}for(var y=0;y<h;y++){if(black.get(0,y)==255)flood.fill(0,y);if(w>1&&black.get(w-1,y)==255)flood.fill(w-1,y);}var rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),masks=[],exclusions=[];function typ(r){var t=r.getProperty('Object_type');if(t==null||String(t)=='')t=r.getProperty('Type');return t==null?'':String(t);}for(var r=0;r<rois.length;r++){var t=typ(rois[r]);if(t=='analysis_mask')masks.push(rois[r]);else if(t=='exclusion')exclusions.push(rois[r]);}function paint(p,r,v){p.setValue(v);p.fill(r);}var inc=new BP(w,h),exc=new BP(w,h),maskApplied=masks.length>0;if(maskApplied){for(var a=0;a<masks.length;a++)paint(inc,masks[a],255);}else{inc.setValue(255);inc.fill();}for(var e=0;e<exclusions.length;e++)paint(exc,exclusions[e],255);var iv=inc.getPixels(),ev=exc.getPixels(),background=0,enclosedBlack=0,coverage=0,outside=0,excluded=0,valid=0;for(var q=0;q<n;q++){var state=Number(bp[q])&255;if(state==128){background++;continue;}coverage++;if(state==255)enclosedBlack++;if(iv[q]==0)outside++;else if(ev[q]!=0)excluded++;else valid++;}OUT='OK|'+w+'|'+h+'|'+background+'|'+enclosedBlack+'|'+coverage+'|'+outside+'|'+excluded+'|'+valid+'|'+(maskApplied?1:0);}catch(ex){OUT='ERROR|'+String(ex);}String(OUT);";
    result = "" + eval("js", js);
    parts = split(result,"|");
    if (parts.length < 10 || parts[0] != "OK") { if (verbose) showMessage("Fallback no calculado", result); return 0; }
    backgroundPixels = parseFloat(parts[3]);
    enclosedBlackPixels = parseFloat(parts[4]);
    coveragePixels = parseFloat(parts[5]);
    outsidePixels = parseFloat(parts[6]);
    excludedPixels = parseFloat(parts[7]);
    validPixels = parseFloat(parts[8]);
    inclusionApplied = round(parseFloat(parts[9]));
    pixelAreaNm2 = nmPerPixelX*nmPerPixelY;
    lastValidAreaNm2 = validPixels*pixelAreaNm2;
    generatedTime = d2s(getTime(),0);
    method = "black_background_border_connected_4_fallback_uncertified";
    csv = "project_id,revision_id,current_montage_pointer_sha256,master_revision_manifest_sha256,master_native_plan_sha256,master_sha256,master_ownership_sha256,panel_id,owner_code,valid_pixel_count,valid_area_nm2,valid_area_um2,method,coverage_pixel_count,outside_inclusion_pixel_count,excluded_pixel_count,inclusion_mask_applied,ownership_image,ownership_certified,generated_time_ms\n";
    csv = csv + projectAwareCsvEscape(v4ProjectId) + "," + projectAwareCsvEscape(v4MasterRevisionId) + "," + projectAwareCsvEscape(v4CurrentMontagePointerSha256) + "," + projectAwareCsvEscape(v4MasterRevisionManifestSha256) + "," + projectAwareCsvEscape(v4MasterNativePlanSha256) + "," + projectAwareCsvEscape(v4MasterSha256) + "," + projectAwareCsvEscape(v4MasterOwnershipSha256) + ",__TOTAL__,0," + d2s(validPixels,0) + "," + d2s(lastValidAreaNm2,9) + "," + d2s(lastValidAreaNm2/1000000.0,12) + "," + projectAwareCsvEscape(method) + "," + d2s(coveragePixels,0) + "," + d2s(outsidePixels,0) + "," + d2s(excludedPixels,0) + "," + inclusionApplied + ",,0," + generatedTime + "\n";
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar el area fallback", verbose)) return 0;
    exportsDir = projectAwareJoinPath(v4ProjectDir,"exports"); makeDirIfMissing(exportsDir);
    v51LastExactAreaCsv = projectAwareJoinPath(exportsDir,"valid_area_by_panel.csv");
    File.saveString(csv,v51LastExactAreaCsv);
    v51LastExactAreaMethod = method;
    qcDir = projectAwareJoinPath(v4ProjectDir,"qc"); makeDirIfMissing(qcDir);
    File.saveString("Cavity TEM Studio v5.6.0 - FALLBACK DE AREA NO CERTIFICADO\n\nMetodo: "+method+"\nFondo negro 4-conexo al borde: "+d2s(backgroundPixels,0)+" px\nNegro interior preservado: "+d2s(enclosedBlackPixels,0)+" px\nArea valida: "+d2s(lastValidAreaNm2,9)+" nm^2\n\nRegenere el montaje para obtener ownership certificado antes de publicar resultados por panel.\n",projectAwareJoinPath(qcDir,"fiji_black_background_fallback.txt"));
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de publicar el area fallback", verbose)) return 0;
    showStatus("Area fallback calculada y marcada como NO CERTIFICADA.");
    if (verbose) showMessage("Area por fondo negro - NO CERTIFICADA", "Fondo negro conectado al borde: "+d2s(backgroundPixels,0)+" px\nNegro interior preservado: "+d2s(enclosedBlackPixels,0)+" px\nValidos tras inclusion/exclusiones: "+d2s(validPixels,0)+" px\nArea: "+d2s(lastValidAreaNm2,3)+" nm^2\n\nNo hay desglose fiable por panel. Resultado: "+v51LastExactAreaCsv);
    return 1;
}

function v4ExportAll() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("exportar", 1)) return;
    if (!v56RequireCurrentSessionQuantitative("exportar o analizar resultados", 1)) return;
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra la imagen asociada antes de exportar."); return; }
    run("ROI Manager...");
    if (roiManager("count") == 0) { showMessage("Sin ROIs", "No hay objetos para exportar."); return; }
    foreignProjectRois = v4CountForeignProjectRois();
    if (foreignProjectRois > 0) {
        showMessage("Exportacion bloqueada", "El ROI Manager contiene " + foreignProjectRois + " ROI asociados a otro proyecto.\n\nNo se ha reescrito ningun Project_id. Limpie el ROI Manager y cargue la sesion correcta antes de exportar.");
        return;
    }
    syncAllObjects(0);
    if (!quantitativeExportPreflight()) return;
    // Reject incomplete identity before the compatibility upgrader can fill
    // anything. Once this read-only gate is green, the upgrader only refreshes
    // already identified ROI and the central save gate validates them again.
    exportIdentityDraft = v56CollectRoiDraftJson();
    if (exportIdentityDraft == "") {
        showMessage("Exportacion bloqueada", v56RoiDraftError);
        return;
    }
    v4UpgradeAllRois();
    exactAreaReady = v51ComputeAndSaveExactValidArea(0);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "preparar la exportacion v4", 1)) return;
    v4RunId = "RUN_" + v4Timestamp();
    exports = projectAwareJoinPath(v4ProjectDir,"exports"); makeDirIfMissing(exports);
    runDir = projectAwareJoinPath(projectAwareJoinPath(exports,"runs"),v4RunId); makeDirIfMissing(runDir);
    objectsPath=projectAwareJoinPath(exports,"objects_v4.csv");
    featuresPath=projectAwareJoinPath(exports,"features_v4.csv");
    regionsPath=projectAwareJoinPath(exports,"regions_v4.csv");
    header=v4ExportHeader();
    objects=header; features=header; regions=header;
    n=roiManager("count"); objectCount=0; featureCount=0; regionCount=0;
    for (i=0;i<n;i++) {
        safeRoiSelect(i);
        type=Roi.getProperty("Object_type"); if(type=="") type=currentRoiType();
        if(type=="session_metadata" || type=="scale_label") continue;
        line=v4ExportLine(i,type);
        role=propString("Scientific_role",v4RoleForType(type));
        if(role=="region") { regions=regions+line; regionCount++; }
        else if(role=="line_feature" || role=="reference_feature") { features=features+line; featureCount++; }
        else { objects=objects+line; objectCount++; }
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar la exportacion v4", 1)) return;
    File.saveString(objects,objectsPath); File.saveString(features,featuresPath); File.saveString(regions,regionsPath);
    File.saveString(objects,projectAwareJoinPath(runDir,"objects_v4.csv"));
    File.saveString(features,projectAwareJoinPath(runDir,"features_v4.csv"));
    File.saveString(regions,projectAwareJoinPath(runDir,"regions_v4.csv"));
    if (exactAreaReady && v51LastExactAreaCsv != "" && File.exists(v51LastExactAreaCsv)) File.saveString(File.openAsString(v51LastExactAreaCsv),projectAwareJoinPath(runDir,"valid_area_by_panel.csv"));
    if (!v4SaveSession()) {
        showMessage("Exportacion bloqueada", "No se pudo preparar la solicitud ROI asociada. No se publicara el manifest de esta ejecucion.");
        return;
    }
    v4PersistSurfaceState();
    runJson="{\n  \"run_id\": \""+jsonEscape(v4RunId)+"\",\n  \"project_id\": \""+jsonEscape(v4ProjectId)+"\",\n  \"revision_id\": \""+jsonEscape(v4MasterRevisionId)+"\",\n  \"current_montage_pointer_sha256\": \""+v4CurrentMontagePointerSha256+"\",\n  \"master_revision_manifest_sha256\": \""+v4MasterRevisionManifestSha256+"\",\n  \"master_native_plan_sha256\": \""+v4MasterNativePlanSha256+"\",\n  \"master_sha256\": \""+v4MasterSha256+"\",\n  \"master_ownership_sha256\": \""+v4MasterOwnershipSha256+"\",\n  \"tool_version\": \""+v4ToolVersion+"\",\n  \"created_time_ms\": \""+d2s(getTime(),0)+"\",\n  \"objects\": "+objectCount+",\n  \"features\": "+featureCount+",\n  \"regions\": "+regionCount+",\n  \"exact_area_ready\": "+exactAreaReady+",\n  \"exact_area_method\": \""+jsonEscape(v51LastExactAreaMethod)+"\",\n  \"valid_area_nm2\": "+jsonNumber(lastValidAreaNm2)+",\n  \"calibration_id\": \""+jsonEscape(v4CalibrationId)+"\",\n  \"surface_id\": \""+jsonEscape(v4SurfaceId)+"\"\n}\n";
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar el manifest de ejecucion", 1)) return;
    File.saveString(runJson,projectAwareJoinPath(runDir,"run_manifest.json"));
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar la exportacion v4", 1)) return;
    areaText = "Area exacta: no disponible; no use densidades hasta corregir ownership/mascaras.";
    if (exactAreaReady) areaText = "Area exacta: " + d2s(lastValidAreaNm2,3) + " nm^2 (desglose por panel guardado).";
    showMessage("Exportacion Cavity TEM 5.6.0 completada", "Ejecucion: "+v4RunId+"\n\nObjetos: "+objectCount+"\nLineas/referencias: "+featureCount+"\nRegiones: "+regionCount+"\n"+areaText+"\n\n"+runDir);
}

function v4ExportHeader() {
    return "run_id,object_id,object_uuid,roi_index,roi_set_id,object_type,object_subtype,geometry,scientific_role,object_class,confidence,review_status,include_in_statistics,count_valid,size_valid,position_valid,exclusion_reason,project_id,revision_id,current_montage_pointer_sha256,master_revision_manifest_sha256,master_native_plan_sha256,master_sha256,master_ownership_sha256,study_id,study_name,sample_id,material,condition,specimen_id,specimen_label,acquisition_id,acquisition_label,analysis_image_name,analysis_image_role,source_filename,panel_id,panel_match_count,effective_owner_code,geometric_coverage_count,crosses_panel_boundary,panel_boundary_reviewed,x_global_px,y_global_px,x_local_px,y_local_px,x_center_nm,y_center_nm,equivalent_diameter_nm,major_axis_nm,minor_axis_nm,aspect_ratio,projected_area_nm2,perimeter_nm,circularity,length_nm,orientation_deg,measurement_method,closed_contour,trace_session_id,auto_accepted,analyst_note,surface_id,surface_position_nm,signed_depth_nm,absolute_depth_nm,distance_to_surface_nm,edge_intersecting,manual_excluded,duplicate_status,calibration_id,measurement_protocol_id,operator,created_time_ms,modified_time_ms,tool_version,foil_thickness_nm\n";
}

function v4ExportLine(idx,type) {
    id=propString("Object_id",objectIdCurrent(currentRoiType()));
    getSelectionBounds(x,y,w,h); cx=x+w/2; cy=y+h/2;
    vals=newArray(
        v4RunId,id,propString("Object_uuid",""),idx,propString("ROI_set_id",v4SetIdForType(type)),type,propString("Object_subtype",""),propString("Geometry",""),propString("Scientific_role",v4RoleForType(type)),propString("Object_class",propString("Cavity_class","")),propString("Confidence",propString("Cavity_confidence","")),propString("Review_status",""),propString("Include_in_statistics","1"),propString("Count_valid","1"),propString("Size_valid","1"),propString("Position_valid","1"),propString("Exclusion_reason",""),v4ProjectId,v4MasterRevisionId,v4CurrentMontagePointerSha256,v4MasterRevisionManifestSha256,v4MasterNativePlanSha256,v4MasterSha256,v4MasterOwnershipSha256,v4StudyId,v4StudyName,v4SampleId,v4Material,v4Condition,v4SpecimenId,v4SpecimenLabel,v4AcquisitionId,v4AcquisitionLabel,getTitle(),projectAwareCurrentAnalysisImageRole,propString("Source_filename",""),propString("Panel_id",""),propString("Panel_match_count","0"),propString("Effective_owner_code","0"),propString("Geometric_coverage_count","0"),propString("Crosses_panel_boundary","0"),propString("Panel_boundary_reviewed","0"),d2s(cx,6),d2s(cy,6),propString("X_local_px",""),propString("Y_local_px",""),d2s(cx*nmPerPixelX,6),d2s(cy*nmPerPixelY,6),propString("Equivalent_diameter_nm",propString("Diameter_nm","")),propString("Major_axis_nm",""),propString("Minor_axis_nm",""),propString("Aspect_ratio",""),propString("Projected_area_nm2",propString("Cavity_area_nm2",propString("Area_nm2",""))),propString("Perimeter_nm",""),propString("Circularity",""),propString("Length_nm",""),propString("Orientation_deg",propString("Surface_tangent_angle_deg","")),propString("Measurement_method",""),propString("Closed_contour","0"),propString("Trace_session_id",""),propString("Auto_accepted","0"),propString("Analyst_note",""),v4SurfaceId,propString("Surface_position_nm",""),propString("Signed_depth_nm",propString("Depth_nm","")),propString("Absolute_depth_nm",propString("Depth_absolute_nm","")),propString("Distance_to_surface_nm",propString("Depth_absolute_nm","")),propString("Edge_intersecting","0"),propString("Manual_excluded","0"),propString("Duplicate_status","clear"),v4CalibrationId,propString("Measurement_protocol_id",v4ProtocolForType(type)),propString("Operator",operatorName),propString("Created_time_ms",""),propString("Modified_time_ms",""),v4ToolVersion,v4Field("foil_thickness_nm")
    );
    line="";
    for(k=0;k<vals.length;k++) { if(k>0) line=line+","; line=line+projectAwareCsvEscape(vals[k]); }
    return line+"\n";
}

// -------------------------------------------------------------------------
// Phase 2A - Fiji is a request producer, never the session publisher.
//
// A successful save creates exactly three files below a new staging
// directory, verifies their hashes and inventory, then atomically renames the
// staging directory to its immutable request_id. It never writes either
// legacy flat ZIP and never changes sessions/current_roi_session.json.
// Runtime evidence: NO PROBADO EN FIJI REAL.
// -------------------------------------------------------------------------

function v56NewRequestIdentityJava() {
    v56RequestId = "";
    v56PreparedAt = "";
    js = "var Instant=Packages.java.time.Instant,Formatter=Packages.java.time.format.DateTimeFormatter,ZoneOffset=Packages.java.time.ZoneOffset,UUID=Packages.java.util.UUID;var OUT='ERROR';try{var now=Instant.now();var stamp=Formatter.ofPattern(\"yyyyMMdd'T'HHmmss.SSSSSS'Z'\").withZone(ZoneOffset.UTC).format(now);OUT=String(stamp)+'_'+String(UUID.randomUUID()).toLowerCase()+'|'+String(Formatter.ISO_INSTANT.format(now));}catch(ex){OUT='ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}String(OUT);";
    result = "" + eval("js", js);
    parts = split(result, "|");
    if (parts.length < 2 || startsWith(result, "ERROR|")) return 0;
    v56RequestId = "" + parts[0];
    v56PreparedAt = "" + parts[1];
    if (!matches(v56RequestId, "^[0-9]{8}T[0-9]{6}\\.[0-9]{6}Z_[0-9a-f]{8}-[0-9a-f]{4}-[1-5][0-9a-f]{3}-[89ab][0-9a-f]{3}-[0-9a-f]{12}$")) return 0;
    return 1;
}

function v56CreateRequestStagingJava(requestRoot, stagingPath, finalPath) {
    js = "var File=Packages.java.io.File,Files=Packages.java.nio.file.Files;var OUT='ERROR';function canon(f){return String(f.getCanonicalPath()).replace(/\\\\/g,'/');}try{var project=new File('" + jsEscape(v4ProjectDir) + "').getCanonicalFile(),sessions=new File(project,'sessions').getCanonicalFile(),requests=new File('" + jsEscape(requestRoot) + "').getCanonicalFile(),staging=new File('" + jsEscape(stagingPath) + "').getCanonicalFile(),finalDir=new File('" + jsEscape(finalPath) + "').getCanonicalFile();if(canon(requests)!=canon(new File(sessions,'roi_session_requests').getCanonicalFile()))throw new Error('request_root_no_canonico');if(!sessions.exists()&&!sessions.mkdir())throw new Error('no_se_pudo_crear_sessions');if(!requests.exists()&&!requests.mkdir())throw new Error('no_se_pudo_crear_request_root');if(Files.isSymbolicLink(requests.toPath()))throw new Error('request_root_es_enlace');if(canon(staging.getParentFile())!=canon(requests)||canon(finalDir.getParentFile())!=canon(requests))throw new Error('destino_fuera_de_request_root');if(staging.exists()||finalDir.exists())throw new Error('request_id_ya_existe');if(!staging.mkdir())throw new Error('no_se_pudo_crear_staging');OUT='OK';}catch(ex){OUT='ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}String(OUT);";
    return "" + eval("js", js);
}

function v56CanonicalScientificRole(rawRole) {
    role = toLowerCase(String.trim("" + rawRole));
    // The mature v8/v9 core used "defect" for object ROIs. Phase 2A names
    // that same documented semantic class "object"; no missing role is inferred.
    if (role == "defect") role = "object";
    if (role == "object" || role == "region" || role == "line_feature" || role == "reference_feature" || role == "surface" || role == "scale_reference" || role == "metadata") return "" + role;
    return "";
}

function v56ImageJRoiType() {
    if (selectionType == 0) return "rectangle";
    if (selectionType == 1) return "oval";
    if (selectionType == 2) return "polygon";
    if (selectionType == 3) return "freehand";
    if (selectionType == 4) return "traced";
    if (selectionType == 5) return "straight_line";
    if (selectionType == 6) return "polyline";
    if (selectionType == 7) return "freeline";
    if (selectionType == 8) return "angle";
    if (selectionType == 9) return "composite";
    if (selectionType == 10) return "point";
    return "unknown_" + selectionType;
}

function v56SelectedRoiObservationJava(imagejType) {
    js = "var File=Packages.java.io.File,FOS=Packages.java.io.FileOutputStream,Files=Packages.java.nio.file.Files,MD=Packages.java.security.MessageDigest,Integer=Packages.java.lang.Integer,StringBuilder=Packages.java.lang.StringBuilder,IJ=Packages.ij.IJ,Roi=Packages.ij.gui.Roi,Line=Packages.ij.gui.Line,RoiEncoder=Packages.ij.io.RoiEncoder,RoiDecoder=Packages.ij.io.RoiDecoder,kind='" + jsEscape(imagejType) + "',snapshotDir='" + jsEscape(v56RoiSnapshotDirectory) + "',entryName='" + jsEscape(v56RoiSnapshotEntryName) + "',OUT='ERROR';";
    js = js + "function finite(v){return typeof v=='number'&&isFinite(v);}function nonnegative(v){return finite(v)&&v>=0;}function distance(x1,y1,x2,y2){var dx=x2-x1,dy=y2-y1;return Math.sqrt(dx*dx+dy*dy);}function hex(bytes){var sb=new StringBuilder();for(var i=0;i<bytes.length;i++){var v=Number(bytes[i])&255;if(v<16)sb.append('0');sb.append(Integer.toHexString(v));}return String(sb.toString());}function shaBytes(bytes){return hex(MD.getInstance('SHA-256').digest(bytes));}function quantize(v){if(v===null||typeof v=='string'||typeof v=='boolean')return v;if(typeof v=='number'){if(!finite(v))throw new Error('geometria_no_finita');var n=Number(v.toFixed(6));return n===0?0:n;}if(Object.prototype.toString.call(v)=='[object Array]'){var a=[];for(var i=0;i<v.length;i++)a.push(quantize(v[i]));return a;}if(typeof v=='object'){var o={};for(var k in v)if(Object.prototype.hasOwnProperty.call(v,k))o[k]=quantize(v[k]);return o;}throw new Error('geometria_tipo_no_valido');}";
    js = js + "function typeName(roi){var t=Number(roi.getType());if(t==Roi.RECTANGLE)return 'rectangle';if(t==Roi.OVAL)return 'oval';if(t==Roi.POLYGON)return 'polygon';if(t==Roi.FREEROI)return 'freehand';if(t==Roi.TRACED_ROI)return 'traced';if(t==Roi.LINE)return 'straight_line';if(t==Roi.POLYLINE)return 'polyline';if(t==Roi.FREELINE)return 'freeline';if(t==Roi.ANGLE)return 'angle';if(t==Roi.COMPOSITE)return 'composite';if(t==Roi.POINT)return 'point';return 'unknown_'+t;}";
    js = js + "try{var imp=IJ.getImage(),live=imp==null?null:imp.getRoi();if(live==null)throw new Error('roi_no_seleccionada');var bytes=RoiEncoder.saveAsByteArray(live);if(bytes==null||Number(bytes.length)<64)throw new Error('roi_encoder_sin_bytes');var decoded=RoiDecoder.openFromByteArray(bytes);if(decoded==null)throw new Error('roi_decoder_sin_roi');var decodedKind=typeName(decoded);if(decodedKind!=kind)throw new Error('tipo_serializado_no_coincide:'+kind+':'+decodedKind);var b=decoded.getFloatBounds(),x=Number(b.getX()),y=Number(b.getY()),w=Number(b.getWidth()),h=Number(b.getHeight()),vertices=[],fp=null;";
    js = js + "if(kind=='straight_line'){if(!(decoded instanceof Line))throw new Error('straight_line_no_es_Line');vertices=[[Number(decoded.x1d),Number(decoded.y1d)],[Number(decoded.x2d),Number(decoded.y2d)]];}else if(kind!='rectangle'&&kind!='oval'){fp=decoded.getFloatPolygon();if(fp!=null){for(var i=0;i<Number(fp.npoints);i++)vertices.push([Number(fp.xpoints[i]),Number(fp.ypoints[i])]);}}";
    js = js + "var area=null,perimeter=null,areaMethod='unsupported_imagej_observation_v1',perimeterMethod='unsupported_imagej_observation_v1',comparable=false,geometryClass=kind,rounded=kind=='rectangle'&&Number(decoded.getCornerDiameter())>0;if(rounded)geometryClass='rounded_rectangle';if(kind=='rectangle'){area=w*h;perimeter=2*(w+h);if(rounded){areaMethod='fiji_rounded_rectangle_bounding_rect_diagnostic_v1';perimeterMethod='fiji_rounded_rectangle_bounding_rect_diagnostic_v1';comparable=false;}else{areaMethod='fiji_rectangle_float_bounds_v1';perimeterMethod='fiji_rectangle_float_bounds_v1';comparable=true;}}else if(kind=='oval'){var a=w/2,c=h/2;area=Math.PI*a*c;if(a+c==0)perimeter=0;else{var rh=((a-c)/(a+c))*((a-c)/(a+c));perimeter=Math.PI*(a+c)*(1+(3*rh)/(10+Math.sqrt(4-3*rh)));}areaMethod='fiji_ellipse_float_bounds_v1';perimeterMethod='fiji_ellipse_ramanujan_ii_v1';comparable=true;}else if(kind=='straight_line'){area=0;perimeter=distance(vertices[0][0],vertices[0][1],vertices[1][0],vertices[1][1]);var rawLength=Number(decoded.getRawLength()),lineTolerance=0.000001+0.000000001*Math.max(Math.abs(rawLength),Math.abs(perimeter),1);if(!finite(rawLength)||Math.abs(rawLength-perimeter)>lineTolerance)throw new Error('line_raw_length_no_coincide_con_extremos_serializados');areaMethod='fiji_zero_for_open_path_v1';perimeterMethod='fiji_line_get_raw_length_v1';comparable=true;}else if(kind=='polygon'||kind=='freehand'||kind=='traced'||kind=='polyline'||kind=='freeline'){area=0;perimeter=0;var closed=(kind=='polygon'||kind=='freehand'||kind=='traced');for(var p=1;p<vertices.length;p++)perimeter+=distance(vertices[p-1][0],vertices[p-1][1],vertices[p][0],vertices[p][1]);if(closed&&vertices.length>1)perimeter+=distance(vertices[vertices.length-1][0],vertices[vertices.length-1][1],vertices[0][0],vertices[0][1]);if(closed&&vertices.length>=3){var twice=0;for(var q=0;q<vertices.length;q++){var next=(q+1)%vertices.length;twice+=vertices[q][0]*vertices[next][1]-vertices[next][0]*vertices[q][1];}area=Math.abs(twice)/2;}areaMethod=closed?'fiji_shoelace_closed_v1':'fiji_zero_for_open_path_v1';perimeterMethod=closed?'fiji_closed_float_polygon_length_v1':'fiji_open_float_polygon_length_v1';comparable=true;}";
    js = js + "if(!finite(x)||!finite(y)||!nonnegative(w)||!nonnegative(h)||area!==null&&!nonnegative(area)||perimeter!==null&&!nonnegative(perimeter))throw new Error('geometria_no_finita');var observation={purpose:'diagnostic_only',imagej_roi_type:kind,geometry:{geometry_class:geometryClass,vertices_px:vertices},bounding_box:{height:h,width:w,x:x,y:y},centroid:{x:x+w/2,y:y+h/2},area:{value:area,unit:'px2',method:areaMethod,comparable_to_canonical:comparable},perimeter:{value:perimeter,unit:'px',method:perimeterMethod,comparable_to_canonical:comparable}},normalized=quantize(observation);";
    js = js + "if(snapshotDir!=''){if(entryName==''||entryName.indexOf('/')>=0||entryName.indexOf('\\\\')>=0||entryName.toLowerCase().substring(entryName.length-4)!='.roi')throw new Error('entry_name_snapshot_no_plano');var root=new File(snapshotDir).getCanonicalFile(),file=new File(root,entryName).getCanonicalFile();if(!root.isDirectory()||file.getParentFile().getCanonicalPath()!=root.getCanonicalPath()||file.exists())throw new Error('ruta_snapshot_no_segura_o_existente');var stream=new FOS(file);try{stream.write(bytes);stream.flush();stream.getFD().sync();}finally{stream.close();}var persisted=Files.readAllBytes(file.toPath()),before=shaBytes(bytes),after=shaBytes(persisted);if(Number(persisted.length)!=Number(bytes.length)||before!=after)throw new Error('ROI_SESSION_SERIALIZED_SNAPSHOT_MISMATCH');OUT=JSON.stringify({entry_sha256:before,entry_size_bytes:Number(bytes.length),fiji_observation:normalized});}else{OUT=JSON.stringify(quantize(observation));}}catch(ex){OUT='ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}String(OUT);";
    return "" + eval("js", js);
}

function v56CollectRoiDraftJson() {
    v56RoiDraftError = "";
    v56RoiDraftCount = 0;
    run("ROI Manager...");
    total = roiManager("count");
    if (total <= 0) { v56RoiDraftError = "El ROI Manager esta vacio."; return ""; }
    entryNames = newArray(total);
    objectUuids = newArray(total);
    roleIds = newArray(total);
    rows = "";
    for (draftIndex=0; draftIndex<total; draftIndex++) {
        if (!safeRoiSelect(draftIndex)) { v56RoiDraftError = "No se pudo seleccionar la ROI " + draftIndex + "."; return ""; }
        objectUuid = toLowerCase(String.trim(propString("Object_uuid", "")));
        objectId = String.trim(propString("Object_id", ""));
        rawRole = String.trim(propString("Scientific_role", ""));
        scientificRole = v56CanonicalScientificRole(rawRole);
        roiSetId = String.trim(propString("ROI_set_id", ""));
        objectClass = String.trim(propString("Object_class", ""));
        objectSubtype = String.trim(propString("Object_subtype", ""));
        // The binary ImageJ type is the canonical geometric class. The older
        // free-text Geometry property remains descriptive metadata only.
        geometryClass = v56ImageJRoiType();
        reviewStatus = String.trim(propString("Review_status", ""));
        createdTime = String.trim(propString("Created_time_ms", ""));
        modifiedTime = String.trim(propString("Modified_time_ms", ""));
        if (!matches(objectUuid, "^[0-9a-f]{8}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{12}$")) { v56RoiDraftError = "ROI " + draftIndex + ": Object_uuid ausente o no valido."; return ""; }
        if (objectId == "") { v56RoiDraftError = "ROI " + draftIndex + ": Object_id ausente."; return ""; }
        if (rawRole == "" || scientificRole == "") { v56RoiDraftError = "ROI " + draftIndex + ": Scientific_role ausente o no admitido."; return ""; }
        if (roiSetId == "") { v56RoiDraftError = "ROI " + draftIndex + ": ROI_set_id ausente."; return ""; }
        if (objectClass == "" || objectSubtype == "") { v56RoiDraftError = "ROI " + draftIndex + ": Object_class/Object_subtype ausentes."; return ""; }
        if (geometryClass == "") { v56RoiDraftError = "ROI " + draftIndex + ": Geometry ausente."; return ""; }
        if (reviewStatus != "pending" && reviewStatus != "reviewed") { v56RoiDraftError = "ROI " + draftIndex + ": Review_status solo admite pending o reviewed."; return ""; }
        if (createdTime == "" || modifiedTime == "") { v56RoiDraftError = "ROI " + draftIndex + ": tiempos de creacion/modificacion ausentes."; return ""; }
        includeRaw = toLowerCase(String.trim(propString("Include_in_statistics", "")));
        if (includeRaw == "1" || includeRaw == "true" || includeRaw == "yes" || includeRaw == "si") includeJson = "true";
        else if (includeRaw == "0" || includeRaw == "false" || includeRaw == "no") includeJson = "false";
        else { v56RoiDraftError = "ROI " + draftIndex + ": Include_in_statistics no es booleano explicito."; return ""; }
        roiName = String.trim("" + Roi.getName);
        if (roiName == "") { v56RoiDraftError = "ROI " + draftIndex + ": nombre ImageJ ausente."; return ""; }
        entryName = roiName;
        if (!endsWith(toLowerCase(entryName), ".roi")) entryName = entryName + ".roi";
        if (indexOf(entryName, "/") >= 0 || indexOf(entryName, "\\") >= 0) { v56RoiDraftError = "ROI " + draftIndex + ": entry_name no es plano."; return ""; }
        roleIdKey = toLowerCase(scientificRole + "|" + objectId);
        for (seenIndex=0; seenIndex<draftIndex; seenIndex++) {
            if (toLowerCase(entryNames[seenIndex]) == toLowerCase(entryName)) { v56RoiDraftError = "entry_name duplicado: " + entryName; return ""; }
            if (objectUuids[seenIndex] == objectUuid) { v56RoiDraftError = "Object_uuid duplicado: " + objectUuid; return ""; }
            if (roleIds[seenIndex] == roleIdKey) { v56RoiDraftError = "Object_id duplicado dentro del rol: " + objectId; return ""; }
        }
        entryNames[draftIndex] = entryName;
        objectUuids[draftIndex] = objectUuid;
        roleIds[draftIndex] = roleIdKey;
        observationJson = v56SelectedRoiObservationJava(geometryClass);
        if (startsWith(observationJson, "ERROR|")) { v56RoiDraftError = "ROI " + draftIndex + ": no se pudo observar la geometria raw-pixel (" + observationJson + ")."; return ""; }
        row = "{\"object_uuid\":\"" + jsonEscape(objectUuid) + "\",\"object_id\":\"" + jsonEscape(objectId) + "\",\"entry_name\":\"" + jsonEscape(entryName) + "\",\"scientific_role\":\"" + jsonEscape(scientificRole) + "\",\"roi_set_id\":\"" + jsonEscape(roiSetId) + "\",\"object_class\":\"" + jsonEscape(objectClass) + "\",\"object_subtype\":\"" + jsonEscape(objectSubtype) + "\",\"review_status\":\"" + jsonEscape(reviewStatus) + "\",\"include_in_statistics\":" + includeJson + ",\"created_time\":\"" + jsonEscape(createdTime) + "\",\"modified_time\":\"" + jsonEscape(modifiedTime) + "\",\"fiji_observation\":" + observationJson + "}";
        if (rows != "") rows = rows + ",";
        rows = rows + row;
    }
    v56RoiDraftCount = total;
    return "{\"rois\":[" + rows + "]}\n";
}

function v56CollectSerializedRoiDraftJson(snapshotDirectory) {
    v56RoiDraftError = "";
    v56RoiDraftCount = 0;
    run("ROI Manager...");
    total = roiManager("count");
    if (total <= 0) { v56RoiDraftError = "El ROI Manager esta vacio."; return ""; }
    entryNames = newArray(total);
    objectUuids = newArray(total);
    roleIds = newArray(total);
    rows = "";
    for (draftIndex=0; draftIndex<total; draftIndex++) {
        if (!safeRoiSelect(draftIndex)) { v56RoiDraftError = "No se pudo seleccionar la ROI " + draftIndex + "."; return ""; }
        objectUuid = toLowerCase(String.trim(propString("Object_uuid", "")));
        objectId = String.trim(propString("Object_id", ""));
        rawRole = String.trim(propString("Scientific_role", ""));
        scientificRole = v56CanonicalScientificRole(rawRole);
        roiSetId = String.trim(propString("ROI_set_id", ""));
        objectClass = String.trim(propString("Object_class", ""));
        objectSubtype = String.trim(propString("Object_subtype", ""));
        geometryClass = v56ImageJRoiType();
        reviewStatus = String.trim(propString("Review_status", ""));
        createdTime = String.trim(propString("Created_time_ms", ""));
        modifiedTime = String.trim(propString("Modified_time_ms", ""));
        if (!matches(objectUuid, "^[0-9a-f]{8}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{12}$")) { v56RoiDraftError = "ROI " + draftIndex + ": Object_uuid ausente o no valido."; return ""; }
        if (objectId == "") { v56RoiDraftError = "ROI " + draftIndex + ": Object_id ausente."; return ""; }
        if (rawRole == "" || scientificRole == "") { v56RoiDraftError = "ROI " + draftIndex + ": Scientific_role ausente o no admitido."; return ""; }
        if (roiSetId == "") { v56RoiDraftError = "ROI " + draftIndex + ": ROI_set_id ausente."; return ""; }
        if (objectClass == "" || objectSubtype == "") { v56RoiDraftError = "ROI " + draftIndex + ": Object_class/Object_subtype ausentes."; return ""; }
        if (geometryClass == "") { v56RoiDraftError = "ROI " + draftIndex + ": Geometry ausente."; return ""; }
        if (reviewStatus != "pending" && reviewStatus != "reviewed") { v56RoiDraftError = "ROI " + draftIndex + ": Review_status solo admite pending o reviewed."; return ""; }
        if (createdTime == "" || modifiedTime == "") { v56RoiDraftError = "ROI " + draftIndex + ": tiempos de creacion/modificacion ausentes."; return ""; }
        includeRaw = toLowerCase(String.trim(propString("Include_in_statistics", "")));
        if (includeRaw == "1" || includeRaw == "true" || includeRaw == "yes" || includeRaw == "si") includeJson = "true";
        else if (includeRaw == "0" || includeRaw == "false" || includeRaw == "no") includeJson = "false";
        else { v56RoiDraftError = "ROI " + draftIndex + ": Include_in_statistics no es booleano explicito."; return ""; }
        roiName = String.trim("" + Roi.getName);
        if (roiName == "") { v56RoiDraftError = "ROI " + draftIndex + ": nombre ImageJ ausente."; return ""; }
        entryName = roiName;
        if (!endsWith(toLowerCase(entryName), ".roi")) entryName = entryName + ".roi";
        if (indexOf(entryName, "/") >= 0 || indexOf(entryName, "\\") >= 0) { v56RoiDraftError = "ROI " + draftIndex + ": entry_name no es plano."; return ""; }
        roleIdKey = toLowerCase(scientificRole + "|" + objectId);
        for (seenIndex=0; seenIndex<draftIndex; seenIndex++) {
            if (toLowerCase(entryNames[seenIndex]) == toLowerCase(entryName)) { v56RoiDraftError = "entry_name duplicado: " + entryName; return ""; }
            if (objectUuids[seenIndex] == objectUuid) { v56RoiDraftError = "Object_uuid duplicado: " + objectUuid; return ""; }
            if (roleIds[seenIndex] == roleIdKey) { v56RoiDraftError = "Object_id duplicado dentro del rol: " + objectId; return ""; }
        }
        entryNames[draftIndex] = entryName;
        objectUuids[draftIndex] = objectUuid;
        roleIds[draftIndex] = roleIdKey;
        v56RoiSnapshotDirectory = "" + snapshotDirectory;
        v56RoiSnapshotEntryName = "" + entryName;
        snapshotJson = v56SelectedRoiObservationJava(geometryClass);
        v56RoiSnapshotDirectory = "";
        v56RoiSnapshotEntryName = "";
        if (startsWith(snapshotJson, "ERROR|")) { v56RoiDraftError = "ROI " + draftIndex + ": fallo el snapshot binario autoritativo (" + snapshotJson + ")."; return ""; }
        row = "{\"object_uuid\":\"" + jsonEscape(objectUuid) + "\",\"object_id\":\"" + jsonEscape(objectId) + "\",\"entry_name\":\"" + jsonEscape(entryName) + "\",\"scientific_role\":\"" + jsonEscape(scientificRole) + "\",\"roi_set_id\":\"" + jsonEscape(roiSetId) + "\",\"object_class\":\"" + jsonEscape(objectClass) + "\",\"object_subtype\":\"" + jsonEscape(objectSubtype) + "\",\"review_status\":\"" + jsonEscape(reviewStatus) + "\",\"include_in_statistics\":" + includeJson + ",\"created_time\":\"" + jsonEscape(createdTime) + "\",\"modified_time\":\"" + jsonEscape(modifiedTime) + "\",\"serialized_snapshot\":" + snapshotJson + "}";
        if (rows != "") rows = rows + ",";
        rows = rows + row;
    }
    v56RoiDraftCount = total;
    return "{\"snapshot_authority\":\"imagej_roi_bytes_v1\",\"rois\":[" + rows + "]}\n";
}

function v56CreateRoiSnapshotDirectoryJava(stagingPath, snapshotPath) {
    js = "var File=Packages.java.io.File,Files=Packages.java.nio.file.Files,OUT='ERROR';try{var staging=new File('" + jsEscape(stagingPath) + "').getCanonicalFile(),snapshot=new File('" + jsEscape(snapshotPath) + "').getCanonicalFile();if(!staging.isDirectory()||snapshot.getParentFile().getCanonicalPath()!=staging.getCanonicalPath()||String(snapshot.getName())!='.roi_snapshot'||snapshot.exists())throw new Error('ruta_snapshot_no_segura_o_existente');if(!snapshot.mkdir()||Files.isSymbolicLink(snapshot.toPath()))throw new Error('no_se_pudo_crear_snapshot');OUT='OK';}catch(ex){OUT='ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}String(OUT);";
    return "" + eval("js", js);
}

function v56BuildCandidateZipFromSnapshotJava(snapshotPath, zipPath) {
    js = "var File=Packages.java.io.File,FOS=Packages.java.io.FileOutputStream,BOS=Packages.java.io.BufferedOutputStream,Files=Packages.java.nio.file.Files,ZipEntry=Packages.java.util.zip.ZipEntry,ZipOutputStream=Packages.java.util.zip.ZipOutputStream,OUT='ERROR',zos=null;function canon(f){return String(f.getCanonicalPath()).replace(/\\\\/g,'/');}try{var snapshot=new File('" + jsEscape(snapshotPath) + "').getCanonicalFile(),zipFile=new File('" + jsEscape(zipPath) + "').getCanonicalFile(),staging=snapshot.getParentFile().getCanonicalFile();if(!snapshot.isDirectory()||String(snapshot.getName())!='.roi_snapshot'||zipFile.getParentFile().getCanonicalPath()!=staging.getCanonicalPath()||String(zipFile.getName())!='rois.candidate.zip'||zipFile.exists()||Files.isSymbolicLink(snapshot.toPath()))throw new Error('rutas_snapshot_zip_no_seguras');var files=snapshot.listFiles();if(files==null||files.length==0)throw new Error('snapshot_vacio');var names=[];for(var i=0;i<files.length;i++){if(!files[i].isFile()||Files.isSymbolicLink(files[i].toPath()))throw new Error('snapshot_contiene_entrada_no_regular');var name=String(files[i].getName());if(name.indexOf('/')>=0||name.indexOf('\\\\')>=0||name.toLowerCase().substring(name.length-4)!='.roi')throw new Error('entry_name_snapshot_no_plano');names.push(name);}names.sort();var fos=new FOS(zipFile),bos=new BOS(fos);zos=new ZipOutputStream(bos);for(var j=0;j<names.length;j++){var file=new File(snapshot,names[j]).getCanonicalFile();if(file.getParentFile().getCanonicalPath()!=snapshot.getCanonicalPath())throw new Error('ROI_snapshot_fuera_de_directorio');var bytes=Files.readAllBytes(file.toPath());if(Number(bytes.length)<64)throw new Error('ROI_snapshot_truncada');var entry=new ZipEntry(names[j]);entry.setTime(0);zos.putNextEntry(entry);zos.write(bytes);zos.closeEntry();}zos.finish();zos.flush();bos.flush();fos.getFD().sync();zos.close();zos=null;if(!zipFile.isFile()||Number(zipFile.length())<=0)throw new Error('ZIP_snapshot_no_creado');OUT='OK|'+names.length;}catch(ex){OUT='ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}finally{try{if(zos!=null)zos.close();}catch(ignore){}}String(OUT);";
    return "" + eval("js", js);
}

function v56RefreshLiveBridgeForRoiWorkflow(actionText) {
    if (v4ProjectDir == "" || v4BridgePointerJson == "" || !File.exists(v4BridgePointerJson)) {
        showMessage("Accion bloqueada", "No se puede " + actionText + ": falta el bridge vivo del proyecto.");
        return 0;
    }
    liveBridgeText = File.openAsString(v4BridgePointerJson);
    liveGeneration = projectAwareReadFieldFromJsonText(liveBridgeText, "generation_id");
    if (liveGeneration == "") {
        showMessage("Accion bloqueada", "No se puede " + actionText + ": current_bridge.json no declara generation_id.");
        return 0;
    }
    if (liveGeneration == v4BridgeGenerationId) return 1;

    // ROI publication legitimately advances project.json and the bridge while
    // Fiji remains open. Reload that live bridge, but only accept it if the
    // scientific montage/calibration binding stayed exactly the same.
    refreshRoot = v4ProjectDir;
    expectedProjectId = v4ProjectId;
    expectedRevisionId = v4MasterRevisionId;
    expectedCurrentMontageSha = v4CurrentMontagePointerSha256;
    expectedRevisionManifestSha = v4MasterRevisionManifestSha256;
    expectedMasterSha = v4MasterSha256;
    expectedCalibrationId = v4CalibrationId;
    if (!v4LoadProject(refreshRoot)) {
        showMessage("Accion bloqueada", "No se puede " + actionText + ": el bridge cambio y no pudo recargarse de forma integra.");
        return 0;
    }
    if (v4ProjectId != expectedProjectId || v4MasterRevisionId != expectedRevisionId ||
        v4CurrentMontagePointerSha256 != expectedCurrentMontageSha ||
        v4MasterRevisionManifestSha256 != expectedRevisionManifestSha ||
        v4MasterSha256 != expectedMasterSha || v4CalibrationId != expectedCalibrationId) {
        v4ProjectLoaded = 0;
        v4RevisionBindingReady = 0;
        showMessage("Accion bloqueada", "No se puede " + actionText + ": el bridge nuevo pertenece a otro binding cientifico. Recargue el proyecto desde Studio.");
        return 0;
    }
    v55InvalidateIntegrityCache();
    return 1;
}

function v56FinalizeRequestJava(stagingPath, finalPath, snapshotPath, draftPath, zipPath, indexPath, commitPath, launchPath, reasonText) {
    projectJsonPath = projectAwareJoinPath(v4ProjectDir, "project.json");
    scaleReportPath = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "qc"), "scale_reconciliation.json");
    currentSessionPointer = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "sessions"), "current_roi_session.json");
    js = "var File=Packages.java.io.File,FIS=Packages.java.io.FileInputStream,FOS=Packages.java.io.FileOutputStream,Files=Packages.java.nio.file.Files,MD=Packages.java.security.MessageDigest,Reflect=Packages.java.lang.reflect.Array,ByteType=Packages.java.lang.Byte.TYPE,Integer=Packages.java.lang.Integer,StringBuilder=Packages.java.lang.StringBuilder,Text=Packages.java.lang.String,ZipFile=Packages.java.util.zip.ZipFile,CopyOption=Packages.java.nio.file.CopyOption,AtomicMove=Packages.java.nio.file.StandardCopyOption.ATOMIC_MOVE;var OUT='ERROR|unknown',lastLabel='request',stream=null,zip=null;var contract=JSON.parse('" + jsEscape(v56RoiSessionContractJson) + "');";
    js = js + "function clean(v){return String(v).replace(/[\\r\\n|]/g,' ');}function fail(label,msg){lastLabel=String(label);throw new Error(String(msg));}function hex(bytes){var sb=new StringBuilder();for(var i=0;i<bytes.length;i++){var value=Number(bytes[i])&255;if(value<16)sb.append('0');sb.append(Integer.toHexString(value));}return String(sb.toString());}function shaBytes(bytes){return hex(MD.getInstance('SHA-256').digest(bytes));}function shaText(value){return shaBytes(new Text(String(value)).getBytes('UTF-8'));}";
    js = js + "function shaFile(file,label){var input=null;try{if(!file.isFile())fail(label,'archivo ausente');var digest=MD.getInstance('SHA-256'),buffer=Reflect.newInstance(ByteType,1048576),count;input=new FIS(file);while((count=input.read(buffer))!=-1)if(count>0)digest.update(buffer,0,count);return hex(digest.digest());}finally{try{if(input!=null)input.close();}catch(ignore){}}}function readText(file,label){if(!file.isFile())fail(label,'archivo ausente');var text=String(new Text(Files.readAllBytes(file.toPath()),'UTF-8'));if(text.length>0&&text.charCodeAt(0)==65279)text=text.substring(1);return text;}function readJson(file,label){try{return JSON.parse(readText(file,label));}catch(ex){fail(label,'JSON no valido: '+clean(ex));}}";
    js = js + "function isArray(v){return Object.prototype.toString.call(v)=='[object Array]';}function stable(v){if(v===null)return 'null';if(isArray(v)){var a=[];for(var i=0;i<v.length;i++)a.push(stable(v[i]));return '['+a.join(',')+']';}if(typeof v=='object'){var keys=[];for(var k in v)if(Object.prototype.hasOwnProperty.call(v,k))keys.push(String(k));keys.sort();var pairs=[];for(var j=0;j<keys.length;j++)pairs.push(JSON.stringify(keys[j])+':'+stable(v[keys[j]]));return '{'+pairs.join(',')+'}';}return JSON.stringify(v);}function semanticGeometry(v){if(v===null||typeof v=='string'||typeof v=='boolean')return v;if(typeof v=='number'){if(!isFinite(v))fail('semantic_sha256','geometria no finita');var n=Number(v);if(n==0)n=0;return n.toFixed(6);}if(isArray(v)){var out=[];for(var si=0;si<v.length;si++)out.push(semanticGeometry(v[si]));return out;}if(typeof v=='object'){var mapped={};for(var sk in v)if(Object.prototype.hasOwnProperty.call(v,sk))mapped[sk]=semanticGeometry(v[sk]);return mapped;}fail('semantic_sha256','tipo de geometria no permitido');}function payloadHash(obj){var copy={};for(var k in obj)if(Object.prototype.hasOwnProperty.call(obj,k)&&k!='payload_sha256')copy[k]=obj[k];return shaText(stable(copy));}function exactKeys(obj,expected,label){if(obj==null||typeof obj!='object'||isArray(obj))fail(label,'objeto ausente');var actual=[];for(var k in obj)if(Object.prototype.hasOwnProperty.call(obj,k))actual.push(String(k));actual.sort();var wanted=expected.slice(0);wanted.sort();if(actual.join('|')!=wanted.join('|'))fail(label,'campos ausentes o adicionales: '+actual.join(','));}";
    js = js + "function canon(file){return String(file.getCanonicalPath()).replace(/\\\\/g,'/');}function same(a,b){return canon(a).toLowerCase()==canon(b).toLowerCase();}function inside(file,base){var child=canon(file).toLowerCase(),root=canon(base).toLowerCase();return child.indexOf(root+'/')==0;}function writeNew(file,text,label){if(file.exists())fail(label,'el archivo ya existe');var output=null;try{output=new FOS(file,false);var bytes=new Text(String(text)).getBytes('UTF-8');output.write(bytes,0,bytes.length);output.getFD().sync();}finally{try{if(output!=null)output.close();}catch(ignore){}}}function fingerprint(files){var rows=[];for(var i=0;i<files.length;i++){var f=files[i].getCanonicalFile();rows.push(canon(f)+'|'+(f.isFile()?String(f.length())+'|'+shaFile(f,'contexto'):'MISSING'));}return shaText(rows.join('\\n'));}";
    js = js + "function inspectZip(file){var result={},folded={},count=0,total=0;zip=new ZipFile(file);var entries=zip.entries();while(entries.hasMoreElements()){var entry=entries.nextElement(),name=String(entry.getName()),lower=name.toLowerCase();if(entry.isDirectory()||name.indexOf('/')>=0||name.indexOf('\\\\')>=0||lower.substring(lower.length-4)!='.roi')fail('rois.candidate.zip','solo se admiten .roi planas');for(var ci=0;ci<name.length;ci++)if(name.charCodeAt(ci)<32)fail('rois.candidate.zip','entry_name contiene control');if(folded[lower])fail('rois.candidate.zip','entry_name duplicado');folded[lower]=1;var size=Number(entry.getSize());if(!isFinite(size)||size<64||size>134217728)fail('rois.candidate.zip','tamano de ROI no permitido');var input=null,digest=MD.getInstance('SHA-256'),buffer=Reflect.newInstance(ByteType,1048576),read,totalEntry=0,magic=[];try{input=zip.getInputStream(entry);while((read=input.read(buffer))!=-1){if(read<=0)continue;for(var mi=0;mi<read&&magic.length<4;mi++)magic.push(Number(buffer[mi])&255);digest.update(buffer,0,read);totalEntry+=read;}}finally{try{if(input!=null)input.close();}catch(ignore){}}if(totalEntry!=size||magic.join(',')!='73,111,117,116')fail('rois.candidate.zip','binario ROI no valido');result[name]={sha256:hex(digest.digest()),size_bytes:totalEntry};total+=totalEntry;count++;if(count>1000000||total>17179869184)fail('rois.candidate.zip','limite de seguridad excedido');}zip.close();zip=null;if(count==0)fail('rois.candidate.zip','ZIP vacio');return result;}";
    js = js + "try{var root=new File('" + jsEscape(v4ProjectDir) + "').getCanonicalFile(),requests=new File(new File(root,'sessions'),'roi_session_requests').getCanonicalFile(),staging=new File('" + jsEscape(stagingPath) + "').getCanonicalFile(),finalDir=new File('" + jsEscape(finalPath) + "').getCanonicalFile(),snapshotDir=new File('" + jsEscape(snapshotPath) + "').getCanonicalFile(),draftFile=new File('" + jsEscape(draftPath) + "').getCanonicalFile(),zipFile=new File('" + jsEscape(zipPath) + "').getCanonicalFile(),indexFile=new File('" + jsEscape(indexPath) + "').getCanonicalFile(),commitFile=new File('" + jsEscape(commitPath) + "').getCanonicalFile(),launchFile=new File('" + jsEscape(launchPath) + "').getCanonicalFile(),bridgeDir=new File(root,'fiji_bridge').getCanonicalFile();if(!same(staging.getParentFile(),requests)||!same(finalDir.getParentFile(),requests)||!same(snapshotDir.getParentFile(),staging)||String(snapshotDir.getName())!='.roi_snapshot'||!inside(draftFile,staging)||!inside(zipFile,staging)||!inside(indexFile,staging)||!inside(commitFile,staging))fail('request','rutas fuera del staging');if(!staging.isDirectory()||!snapshotDir.isDirectory()||Files.isSymbolicLink(snapshotDir.toPath())||finalDir.exists())fail('request','staging o snapshot no validos, o destino existente');if(!same(launchFile.getParentFile(),bridgeDir)||launchFile.getName().indexOf('local_launch_')!=0||String(launchFile.getName()).toLowerCase().substring(String(launchFile.getName()).length-5)!='.json')fail('local_launch','ruta local_launch no canonica');";
    js = js + "var contextFiles=[new File('" + jsEscape(projectJsonPath) + "'),new File('" + jsEscape(v4BridgePointerJson) + "'),new File('" + jsEscape(v4CurrentMontagePointerPath) + "'),new File('" + jsEscape(v4MasterRevisionManifestPath) + "'),new File('" + jsEscape(scaleReportPath) + "'),launchFile,new File('" + jsEscape(currentSessionPointer) + "')],contextBefore=fingerprint(contextFiles),launchHashBefore=shaFile(launchFile,'local_launch'),launch=readJson(launchFile,'local_launch'),binding=launch.roi_session_binding,bindingKeys=['project_id','montage_revision_id','revision_manifest_payload_sha256','revision_manifest_file_sha256','master_sha256','master_dimensions','master_dtype','coordinate_system','calibration_id','calibration_record_sha256','scale_input_signature','scale_report_sha256','toolset_version','toolset_sha256','studio_version'];exactKeys(binding,bindingKeys,'roi_session_binding');if(String(launch.project_id||'')!='" + jsEscape(v4ProjectId) + "'||String(launch.revision_id||'')!='" + jsEscape(v4MasterRevisionId) + "'||String(launch.master_sha256||'').toLowerCase()!='" + jsEscape(v4MasterSha256) + "')fail('local_launch','lanzamiento de otro contexto');if(String(binding.project_id||'')!='" + jsEscape(v4ProjectId) + "'||String(binding.montage_revision_id||'')!='" + jsEscape(v4MasterRevisionId) + "'||String(binding.master_sha256||'').toLowerCase()!='" + jsEscape(v4MasterSha256) + "')fail('roi_session_binding','binding de otro contexto');if(String(binding.coordinate_system||'')!='MASTER_PIXEL_COORDINATES_V1'||String(binding.toolset_version||'')!='5.6.0'||String(binding.studio_version||'')!='5.6.0')fail('roi_session_binding','version o coordenadas no validas');var revisionLive=new File('" + jsEscape(v4MasterRevisionManifestPath) + "').getCanonicalFile(),scaleLive=new File('" + jsEscape(scaleReportPath) + "').getCanonicalFile();if(String(binding.revision_manifest_payload_sha256||'').toLowerCase()!='" + jsEscape(v4MasterRevisionManifestSha256) + "'||String(binding.revision_manifest_file_sha256||'').toLowerCase()!=shaFile(revisionLive,'revision_manifest.json'))fail('roi_session_binding','manifest de revision no coincide');var scaleDocument=readJson(scaleLive,'scale_reconciliation.json');if(String(binding.scale_report_sha256||'').toLowerCase()!=shaFile(scaleLive,'scale_reconciliation.json')||String(binding.scale_input_signature||'')!=String(scaleDocument.input_signature||''))fail('roi_session_binding','reconciliacion de escala no coincide');if(String(binding.calibration_id||'')!='" + jsEscape(v4CalibrationId) + "')fail('roi_session_binding','calibracion activa no coincide');if(!isArray(binding.master_dimensions)||binding.master_dimensions.length!=2||Number(binding.master_dimensions[0])!=" + getWidth() + "||Number(binding.master_dimensions[1])!=" + getHeight() + ")fail('roi_session_binding','dimensiones no coinciden con el maestro activo');for(var bk=0;bk<bindingKeys.length;bk++)if(binding[bindingKeys[bk]]===null||String(binding[bindingKeys[bk]])=='')fail('roi_session_binding','campo vacio: '+bindingKeys[bk]);var tool=launch.toolset;if(tool==null||tool.current!==true||String(tool.status||'')!='CURRENT'||String(tool.source_sha256||'').toLowerCase()!=String(binding.toolset_sha256||'').toLowerCase()||String(tool.installed_sha256||'').toLowerCase()!=String(binding.toolset_sha256||'').toLowerCase())fail('local_launch','toolset no CURRENT');var sourceTool=new File(String(tool.source_path||'')).getCanonicalFile(),installedTool=new File(String(tool.installed_path||'')).getCanonicalFile();if(shaFile(sourceTool,'toolset source')!=String(binding.toolset_sha256).toLowerCase()||shaFile(installedTool,'toolset installed')!=String(binding.toolset_sha256).toLowerCase())fail('local_launch','bytes vivos del toolset no coinciden');";
    js = js + "bindingKeys=contract.scientific_binding_fields;exactKeys(binding,bindingKeys,'roi_session_binding.contract');var projectFile=new File('" + jsEscape(projectJsonPath) + "').getCanonicalFile(),bridgePointerFile=new File('" + jsEscape(v4BridgePointerJson) + "').getCanonicalFile(),liveProject=readJson(projectFile,'project.json'),liveProjectHash=shaFile(projectFile,'project.json'),bridgePointer=readJson(bridgePointerFile,'current_bridge.json');if(String(bridgePointer.payload_sha256||'').toLowerCase()!=payloadHash(bridgePointer))fail('current_bridge.json','payload_sha256 no coincide');var projectVersion=Number(liveProject.project_version),bridgeVersion=Number(bridgePointer.project_version),bridgeGeneration=String(bridgePointer.generation_id||''),generationRelative=String(bridgePointer.generation_relative_path||'').replace(/\\\\/g,'/');if(!isFinite(projectVersion)||Math.floor(projectVersion)!=projectVersion||projectVersion<0||projectVersion!=bridgeVersion)fail('creation_context','project_version no coincide con el bridge vivo');if(String(liveProject.project_id||'')!=String(binding.project_id)||String(bridgePointer.project_id||'')!=String(binding.project_id)||String(bridgePointer.revision_id||'')!=String(binding.montage_revision_id)||String(bridgePointer.project_payload_sha256||'').toLowerCase()!=liveProjectHash)fail('creation_context','project.json y current_bridge.json no forman el mismo snapshot');if(generationRelative!='fiji_bridge/generations/'+bridgeGeneration)fail('current_bridge.json','generation_relative_path no canonica');var bridgeManifestFile=new File(root,generationRelative+'/bridge_generation_manifest.json').getCanonicalFile(),bridgeGenerations=new File(bridgeDir,'generations').getCanonicalFile();if(!inside(bridgeManifestFile,bridgeGenerations))fail('current_bridge.json','manifest de bridge fuera de generations');var bridgeManifestHash=shaFile(bridgeManifestFile,'bridge_generation_manifest.json'),bridgeManifest=readJson(bridgeManifestFile,'bridge_generation_manifest.json');if(bridgeManifestHash!=String(bridgePointer.generation_manifest_sha256||'').toLowerCase()||String(bridgeManifest.payload_sha256||'').toLowerCase()!=payloadHash(bridgeManifest)||String(bridgeManifest.generation_id||'')!=bridgeGeneration||String(bridgeManifest.project_id||'')!=String(binding.project_id)||String(bridgeManifest.revision_id||'')!=String(binding.montage_revision_id)||String(bridgeManifest.project_payload_sha256||'').toLowerCase()!=liveProjectHash||Number(bridgeManifest.project_version)!=projectVersion)fail('bridge_generation_manifest.json','bridge vivo incoherente');var creationContext={project_version:projectVersion,project_payload_sha256:liveProjectHash,bridge_generation_id:bridgeGeneration,bridge_manifest_sha256:bridgeManifestHash};exactKeys(creationContext,contract.creation_context_fields,'creation_context');contextFiles.push(bridgeManifestFile);contextBefore=fingerprint(contextFiles);";
    js = js + "var draft=readJson(draftFile,'roi_index.draft.json');exactKeys(draft,['snapshot_authority','rois'],'roi_index.draft.json');if(String(draft.snapshot_authority||'')!='imagej_roi_bytes_v1'||!isArray(draft.rois)||draft.rois.length==0)fail('roi_index.draft.json','autoridad de snapshot ausente o sin ROI');var binaries=inspectZip(zipFile),rows=[],seenEntries={},seenUuid={},seenRoleId={};for(var ri=0;ri<draft.rois.length;ri++){var source=draft.rois[ri];exactKeys(source,['object_uuid','object_id','entry_name','scientific_role','roi_set_id','object_class','object_subtype','review_status','include_in_statistics','created_time','modified_time','serialized_snapshot'],'ROI draft');var snapshot=source.serialized_snapshot;exactKeys(snapshot,['entry_sha256','entry_size_bytes','fiji_observation'],'serialized_snapshot');var entryName=String(source.entry_name||''),binary=binaries[entryName],uuid=String(source.object_uuid||'').toLowerCase(),role=String(source.scientific_role||''),objectId=String(source.object_id||''),fold=entryName.toLowerCase(),roleId=(role+'|'+objectId).toLowerCase(),observation=snapshot.fiji_observation,snapshotHash=String(snapshot.entry_sha256||'').toLowerCase(),snapshotSize=Number(snapshot.entry_size_bytes);if(binary==null)fail('roi_index','ROI ausente del ZIP: '+entryName);if(!/^[0-9a-f]{64}$/.test(snapshotHash)||!isFinite(snapshotSize)||Math.floor(snapshotSize)!=snapshotSize||snapshotSize<64||binary.sha256!=snapshotHash||Number(binary.size_bytes)!=snapshotSize)fail('ROI_SESSION_SERIALIZED_SNAPSHOT_MISMATCH','los bytes del ZIP no son el snapshot que origino draft, hash y observacion: '+entryName);if(seenEntries[fold]||seenUuid[uuid]||seenRoleId[roleId])fail('roi_index','identidad o entry_name duplicados');seenEntries[fold]=1;seenUuid[uuid]=1;seenRoleId[roleId]=1;if(!/^[0-9a-f]{8}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{12}$/.test(uuid))fail('roi_index','object_uuid no valido');if(['object','region','line_feature','reference_feature','surface','scale_reference','metadata'].indexOf(role)<0||objectId==''||String(source.roi_set_id||'')==''||String(source.review_status||'')==''||typeof source.include_in_statistics!='boolean')fail('roi_index','metadatos ROI incompletos');exactKeys(observation,contract.fiji_observation_fields,'fiji_observation');if(String(observation.purpose||'')!='diagnostic_only'||String(observation.imagej_roi_type||'')=='')fail('fiji_observation','finalidad o tipo ausente');exactKeys(observation.area,contract.fiji_metric_observation_fields,'fiji_observation.area');exactKeys(observation.perimeter,contract.fiji_metric_observation_fields,'fiji_observation.perimeter');var row={object_uuid:uuid,object_id:objectId,entry_name:entryName,entry_sha256:snapshotHash,entry_size_bytes:snapshotSize,scientific_role:role,roi_set_id:String(source.roi_set_id),object_class:String(source.object_class||''),object_subtype:String(source.object_subtype||''),review_status:String(source.review_status),include_in_statistics:source.include_in_statistics,created_time:String(source.created_time||''),modified_time:String(source.modified_time||''),fiji_observation:observation};rows.push(row);}var binaryNames=[];for(var binaryName in binaries)if(Object.prototype.hasOwnProperty.call(binaries,binaryName))binaryNames.push(binaryName.toLowerCase());for(var bi=0;bi<binaryNames.length;bi++)if(!seenEntries[binaryNames[bi]])fail('roi_index','ZIP contiene ROI extra');rows.sort(function(a,b){var ak=String(a.scientific_role)+'\\u0000'+String(a.object_id)+'\\u0000'+String(a.object_uuid),bk=String(b.scientific_role)+'\\u0000'+String(b.object_id)+'\\u0000'+String(b.object_uuid);return ak<bk?-1:(ak>bk?1:0);});";
    js = js + "for(var contractRow=0;contractRow<rows.length;contractRow++){exactKeys(rows[contractRow],contract.roi_request_draft_row_fields,'roi_request_draft.row');if(contract.row_review_statuses.indexOf(String(rows[contractRow].review_status))<0)fail('roi_request_draft.row','review_status no canonico');}";
    js = js + "var index={schema_version:'cavity_roi_request_draft_v1',application_version:'5.6.0',authoritative:false,binding:binding,rois:rows};index.payload_sha256=payloadHash(index);exactKeys(index,contract.roi_request_draft_fields,'roi_index.candidate.json');writeNew(indexFile,JSON.stringify(index,null,2)+'\\n','roi_index.candidate.json');var request={schema_version:'cavity_roi_session_request_v2',application_version:'5.6.0',request_id:'" + jsEscape(v56RequestId) + "',prepared_at:'" + jsEscape(v56PreparedAt) + "',prepared_by:'" + jsEscape(operatorName) + "',reason:'" + jsEscape(reasonText) + "',launch_record_relative_path:'fiji_bridge/'+String(launchFile.getName()),launch_record_sha256:launchHashBefore,creation_context:creationContext,fiji_imagej_version:String(Packages.ij.IJ.getVersion()),java_version:String(Packages.java.lang.System.getProperty('java.version')),candidate_zip_sha256:shaFile(zipFile,'rois.candidate.zip'),candidate_zip_size_bytes:Number(zipFile.length()),candidate_index_sha256:shaFile(indexFile,'roi_index.candidate.json'),candidate_index_size_bytes:Number(indexFile.length())};var forbiddenVersions=['','unknown','none','n/a','na','not available','not_available','synthetic'];if(forbiddenVersions.indexOf(String(request.fiji_imagej_version||'').toLowerCase())>=0||forbiddenVersions.indexOf(String(request.java_version||'').toLowerCase())>=0)fail('commit_request.json','version observada de Fiji/ImageJ o Java ausente');request.payload_sha256=payloadHash(request);exactKeys(request,contract.commit_request_fields,'commit_request.json');writeNew(commitFile,JSON.stringify(request,null,2)+'\\n','commit_request.json');if(!draftFile.delete())fail('request','no se pudo retirar el draft del staging');var snapshotFiles=snapshotDir.listFiles();if(snapshotFiles==null)fail('request','no se pudo listar el snapshot binario');for(var sf=0;sf<snapshotFiles.length;sf++){if(!snapshotFiles[sf].isFile()||Files.isSymbolicLink(snapshotFiles[sf].toPath())||!snapshotFiles[sf].delete())fail('request','no se pudo retirar una ROI del snapshot temporal');}if(!snapshotDir.delete())fail('request','no se pudo retirar el snapshot temporal');var names=[],listed=staging.listFiles();if(listed==null)fail('request','no se pudo listar staging');for(var li=0;li<listed.length;li++)names.push(String(listed[li].getName()));names.sort();if(names.join('|')!='commit_request.json|roi_index.candidate.json|rois.candidate.zip')fail('request','inventario final no exacto: '+names.join(','));if(shaFile(launchFile,'local_launch')!=launchHashBefore||fingerprint(contextFiles)!=contextBefore)fail('request','el contexto vivo cambio durante la preparacion');var opts=Reflect.newInstance(CopyOption,1);opts[0]=AtomicMove;Files.move(staging.toPath(),finalDir.toPath(),opts);if(!finalDir.isDirectory())fail('request','rename atomico no confirmado');OUT='OK|'+canon(finalDir);}catch(ex){OUT='ERROR|'+clean(lastLabel)+'|'+clean(ex);}finally{try{if(stream!=null)stream.close();}catch(ignore){}try{if(zip!=null)zip.close();}catch(ignore){}}String(OUT);";
    return "" + eval("js", js);
}

function v56PrepareRoiSessionRequest(reasonText) {
    if (!v4EnsureProject()) return 0;
    if (!v56RefreshLiveBridgeForRoiWorkflow("preparar la solicitud de sesion ROI")) return 0;
    if (!v4RequireCurrentRevisionBinding("preparar la solicitud de sesion ROI", 1)) return 0;
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra el maestro vigente antes de preparar una solicitud ROI."); return 0; }
    if (String.trim(operatorName) == "") { showMessage("Solicitud bloqueada", "Falta un operador no vacio en el proyecto."); return 0; }
    reasonText = String.trim("" + reasonText);
    if (reasonText == "") { showMessage("Solicitud bloqueada", "Falta un motivo no vacio."); return 0; }
    launchPath = "" + call("ij.Prefs.get", "cavity.v5.launch.request", "");
    if (launchPath == "" || !File.exists(launchPath)) { showMessage("Solicitud bloqueada", "No existe el local_launch_*.json de este lanzamiento. Abra Fiji desde Studio 5.6.0."); return 0; }
    run("ROI Manager...");
    if (roiManager("count") <= 0) { showMessage("Solicitud bloqueada", "El ROI Manager esta vacio."); return 0; }
    updateSessionMetadataRoi();
    if (!v4RequireCurrentRevisionBinding("preparar la solicitud de sesion ROI", 1)) return 0;
    if (!v56NewRequestIdentityJava()) { showMessage("Solicitud bloqueada", "No se pudo generar request_id UTC con microsegundos y UUID."); return 0; }
    sessionsDir = projectAwareJoinPath(v4ProjectDir, "sessions");
    requestRoot = projectAwareJoinPath(sessionsDir, "roi_session_requests");
    stagingPath = projectAwareJoinPath(requestRoot, "." + v56RequestId + ".staging");
    finalPath = projectAwareJoinPath(requestRoot, v56RequestId);
    stagingResult = v56CreateRequestStagingJava(requestRoot, stagingPath, finalPath);
    if (stagingResult != "OK") { showMessage("Solicitud bloqueada", stagingResult); return 0; }
    snapshotPath = projectAwareJoinPath(stagingPath, ".roi_snapshot");
    draftPath = projectAwareJoinPath(stagingPath, "roi_index.draft.json");
    zipPath = projectAwareJoinPath(stagingPath, "rois.candidate.zip");
    indexPath = projectAwareJoinPath(stagingPath, "roi_index.candidate.json");
    commitPath = projectAwareJoinPath(stagingPath, "commit_request.json");
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "preparar la solicitud ROI", 1)) return 0;
    snapshotResult = v56CreateRoiSnapshotDirectoryJava(stagingPath, snapshotPath);
    if (snapshotResult != "OK") { showMessage("Solicitud incompleta", snapshotResult + "\n\nEl staging se conserva para diagnostico:\n" + stagingPath); return 0; }
    draftJson = v56CollectSerializedRoiDraftJson(snapshotPath);
    if (draftJson == "") { showMessage("Solicitud incompleta", v56RoiDraftError + "\n\nEl staging y los snapshots ya creados se conservan para diagnostico:\n" + stagingPath + "\n\nNo se ha publicado ni reemplazado ninguna sesion."); return 0; }
    File.saveString(draftJson, draftPath);
    zipResult = v56BuildCandidateZipFromSnapshotJava(snapshotPath, zipPath);
    if (!startsWith(zipResult, "OK|") || round(parseFloat(substring(zipResult, 3))) != v56RoiDraftCount) { showMessage("Solicitud incompleta", "No se pudo construir el ZIP desde los mismos snapshots ROI: " + zipResult + "\n\nEl staging se conserva para diagnostico:\n" + stagingPath); return 0; }
    finalizeResult = v56FinalizeRequestJava(stagingPath, finalPath, snapshotPath, draftPath, zipPath, indexPath, commitPath, launchPath, reasonText);
    if (!startsWith(finalizeResult, "OK|")) {
        showMessage("Solicitud incompleta", finalizeResult + "\n\nEl staging no es publicable y se conserva para diagnostico:\n" + stagingPath + "\n\ncurrent_roi_session.json no se ha modificado.");
        return 0;
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar la solicitud ROI", 1)) return 0;
    showStatus("Solicitud ROI preparada: " + v56RequestId);
    showMessage("Solicitud ROI preparada", "Solicitud preparada; Studio aun debe validarla y publicarla; current permanece sin cambios.\n\nRequest ID: " + v56RequestId + "\nCarpeta: " + finalPath);
    return 1;
}

function v56ResolveCurrentSessionJava() {
    v56ResolvedSessionZip = "";
    v56ResolvedSessionRoiCount = 0;
    v56SessionValidationError = "";
    v56ResolvedSessionReviewStatus = "";
    v56ResolvedSessionQuantitativeReady = 0;
    v56ResolvedSessionPendingCount = 0;
    v56ResolvedSessionGeometryBlockerCount = 0;
    launchPath = "" + call("ij.Prefs.get", "cavity.v5.launch.request", "");
    projectJsonPath = projectAwareJoinPath(v4ProjectDir, "project.json");
    pointerPath = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "sessions"), "current_roi_session.json");
    scaleReportPath = projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir, "qc"), "scale_reconciliation.json");
    js = "var File=Packages.java.io.File,FIS=Packages.java.io.FileInputStream,Files=Packages.java.nio.file.Files,MD=Packages.java.security.MessageDigest,Reflect=Packages.java.lang.reflect.Array,ByteType=Packages.java.lang.Byte.TYPE,Integer=Packages.java.lang.Integer,StringBuilder=Packages.java.lang.StringBuilder,Text=Packages.java.lang.String,ZipFile=Packages.java.util.zip.ZipFile;var OUT='ERROR|validation|unknown',lastLabel='current_roi_session.json',zip=null,contract=JSON.parse('" + jsEscape(v56RoiSessionContractJson) + "');";
    js = js + "function clean(v){return String(v).replace(/[\\r\\n|]/g,' ');}function fail(label,msg){lastLabel=String(label);throw new Error(String(msg));}function hex(bytes){var sb=new StringBuilder();for(var i=0;i<bytes.length;i++){var value=Number(bytes[i])&255;if(value<16)sb.append('0');sb.append(Integer.toHexString(value));}return String(sb.toString());}function shaBytes(bytes){return hex(MD.getInstance('SHA-256').digest(bytes));}function shaText(v){return shaBytes(new Text(String(v)).getBytes('UTF-8'));}function shaFile(file,label){var input=null;try{if(!file.isFile())fail(label,'archivo ausente');var digest=MD.getInstance('SHA-256'),buffer=Reflect.newInstance(ByteType,1048576),count;input=new FIS(file);while((count=input.read(buffer))!=-1)if(count>0)digest.update(buffer,0,count);return hex(digest.digest());}finally{try{if(input!=null)input.close();}catch(ignore){}}}function readJson(file,label){try{var text=String(new Text(Files.readAllBytes(file.toPath()),'UTF-8'));if(text.length>0&&text.charCodeAt(0)==65279)text=text.substring(1);return JSON.parse(text);}catch(ex){fail(label,'JSON no valido: '+clean(ex));}}function readJsonAtHash(file,expected,label){try{var bytes=Files.readAllBytes(file.toPath());if(shaBytes(bytes)!=String(expected).toLowerCase())fail(label,'bytes cambiaron antes de parsear');var text=String(new Text(bytes,'UTF-8'));if(text.length>0&&text.charCodeAt(0)==65279)text=text.substring(1);return JSON.parse(text);}catch(ex){fail(label,'JSON/hash no valido: '+clean(ex));}}";
    js = js + "function isArray(v){return Object.prototype.toString.call(v)=='[object Array]';}function isInteger(v){return typeof v=='number'&&isFinite(v)&&Math.floor(v)==v;}function isGenerationId(v){return /^[0-9]{8}T[0-9]{6}\\.[0-9]{6}Z_[0-9a-f]{8}-[0-9a-f]{4}-[1-5][0-9a-f]{3}-[89ab][0-9a-f]{3}-[0-9a-f]{12}$/.test(String(v||''));}function isUuid(v){return /^[0-9a-f]{8}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{4}-[0-9a-f]{12}$/.test(String(v||'').toLowerCase());}function stable(v){if(v===null)return 'null';if(isArray(v)){var a=[];for(var i=0;i<v.length;i++)a.push(stable(v[i]));return '['+a.join(',')+']';}if(typeof v=='object'){var keys=[];for(var k in v)if(Object.prototype.hasOwnProperty.call(v,k))keys.push(String(k));keys.sort();var pairs=[];for(var j=0;j<keys.length;j++)pairs.push(JSON.stringify(keys[j])+':'+stable(v[keys[j]]));return '{'+pairs.join(',')+'}';}return JSON.stringify(v);}function semanticGeometry(v){if(v===null||typeof v=='string'||typeof v=='boolean')return v;if(typeof v=='number'){if(!isFinite(v))fail('semantic_sha256','geometria no finita');var n=Number(v);if(n==0)n=0;return n.toFixed(6);}if(isArray(v)){var a=[];for(var i=0;i<v.length;i++)a.push(semanticGeometry(v[i]));return a;}if(typeof v=='object'){var mapped={};for(var k in v)if(Object.prototype.hasOwnProperty.call(v,k))mapped[k]=semanticGeometry(v[k]);return mapped;}fail('semantic_sha256','tipo no permitido');}function payloadHash(obj){var copy={};for(var k in obj)if(Object.prototype.hasOwnProperty.call(obj,k)&&k!='payload_sha256')copy[k]=obj[k];return shaText(stable(copy));}function exactKeys(obj,expected,label){if(obj==null||typeof obj!='object'||isArray(obj))fail(label,'objeto ausente');var actual=[];for(var k in obj)if(Object.prototype.hasOwnProperty.call(obj,k))actual.push(String(k));actual.sort();var wanted=expected.slice(0);wanted.sort();if(actual.join('|')!=wanted.join('|'))fail(label,'campos ausentes o adicionales: '+actual.join(','));}function canon(f){return String(f.getCanonicalPath()).replace(/\\\\/g,'/');}function same(a,b){return canon(a).toLowerCase()==canon(b).toLowerCase();}function inside(f,b){var child=canon(f).toLowerCase(),base=canon(b).toLowerCase();return child.indexOf(base+'/')==0;}function isSha(v){return /^[0-9a-f]{64}$/.test(String(v||'').toLowerCase());}function allowedState(review,ready){for(var i=0;i<contract.published_session_states.length;i++){var state=contract.published_session_states[i];if(String(review)==String(state.review_status)&&ready===state.quantitative_ready)return true;}return false;}function requireVersion(v,label){var text=String(v||'').replace(/^\\s+|\\s+$/g,''),lower=text.toLowerCase(),bad=['','unknown','none','n/a','na','not available','not_available','synthetic'];if(bad.indexOf(lower)>=0)fail(label,'version observada ausente');return text;}";
    js = js + "function finiteObject(v,keys,label){exactKeys(v,keys,label);for(var i=0;i<keys.length;i++)if(typeof v[keys[i]]!='number'||!isFinite(v[keys[i]]))fail(label,'valor no finito: '+keys[i]);}function validateVertices(v,label){if(!isArray(v))fail(label,'vertices_px no es array');for(var i=0;i<v.length;i++){if(!isArray(v[i])||v[i].length!=2||typeof v[i][0]!='number'||!isFinite(v[i][0])||typeof v[i][1]!='number'||!isFinite(v[i][1]))fail(label,'vertice no finito');}}function validateObservationMetric(v,label,unit){exactKeys(v,contract.fiji_metric_observation_fields,label);if(v.value!==null&&(typeof v.value!='number'||!isFinite(v.value)||Number(v.value)<0))fail(label,'valor diagnostico invalido');if(typeof v.comparable_to_canonical!='boolean'||(v.comparable_to_canonical&&v.value===null)||String(v.unit||'').replace(/^\\s+|\\s+$/g,'')==''||String(v.method||'').replace(/^\\s+|\\s+$/g,'')=='')fail(label,'unidad, metodo o comparabilidad invalidos');if(v.comparable_to_canonical&&String(v.unit)!=unit)fail(label,'unidad comparable no canonica');}function validateObservation(v,label){exactKeys(v,contract.fiji_observation_fields,label);if(String(v.purpose||'')!='diagnostic_only'||String(v.imagej_roi_type||'').replace(/^\\s+|\\s+$/g,'')=='')fail(label,'finalidad o tipo diagnostico invalido');exactKeys(v.geometry,['geometry_class','vertices_px'],label+'.geometry');if(String(v.geometry.geometry_class||'').replace(/^\\s+|\\s+$/g,'')=='')fail(label,'clase diagnostica ausente');validateVertices(v.geometry.vertices_px,label+'.geometry');finiteObject(v.bounding_box,['x','y','width','height'],label+'.bounding_box');if(Number(v.bounding_box.width)<0||Number(v.bounding_box.height)<0)fail(label,'bounds diagnosticos negativos');finiteObject(v.centroid,['x','y'],label+'.centroid');validateObservationMetric(v.area,label+'.area','px2');validateObservationMetric(v.perimeter,label+'.perimeter','px');}";
    js = js + "function inspectZip(file){var result={},folded={},count=0,total=0;zip=new ZipFile(file);var entries=zip.entries();while(entries.hasMoreElements()){var entry=entries.nextElement(),name=String(entry.getName()),lower=name.toLowerCase();if(entry.isDirectory()||name.indexOf('/')>=0||name.indexOf('\\\\')>=0||lower.substring(lower.length-4)!='.roi')fail('rois.zip','entrada no ROI o no plana');if(folded[lower])fail('rois.zip','entry_name duplicado');folded[lower]=1;var input=null,digest=MD.getInstance('SHA-256'),buffer=Reflect.newInstance(ByteType,1048576),read,size=0,magic=[];try{input=zip.getInputStream(entry);while((read=input.read(buffer))!=-1){if(read<=0)continue;for(var mi=0;mi<read&&magic.length<4;mi++)magic.push(Number(buffer[mi])&255);digest.update(buffer,0,read);size+=read;}}finally{try{if(input!=null)input.close();}catch(ignore){}}if(size<64||size>134217728||magic.join(',')!='73,111,117,116')fail('rois.zip','binario ROI no valido');result[name]={sha256:hex(digest.digest()),size_bytes:size};total+=size;count++;if(count>1000000||total>17179869184)fail('rois.zip','limite de seguridad excedido');}zip.close();zip=null;if(count==0)fail('rois.zip','ZIP vacio');return {entries:result,count:count};}";
    js = js + "try{var root=new File('" + jsEscape(v4ProjectDir) + "').getCanonicalFile(),projectFile=new File('" + jsEscape(projectJsonPath) + "').getCanonicalFile(),pointerFile=new File('" + jsEscape(pointerPath) + "').getCanonicalFile(),expectedPointer=new File(new File(root,'sessions'),'current_roi_session.json').getCanonicalFile(),activeLaunchFile=new File('" + jsEscape(launchPath) + "').getCanonicalFile(),bridgeDir=new File(root,'fiji_bridge').getCanonicalFile(),currentBridgeFile=new File(bridgeDir,'current_bridge.json').getCanonicalFile();if(!same(pointerFile,expectedPointer))fail('current_roi_session.json','ruta no canonica');if(!activeLaunchFile.isFile()||!same(activeLaunchFile.getParentFile(),bridgeDir))fail('active_launch','launch activo ausente o no canonico');var activeLaunchHashBefore=shaFile(activeLaunchFile,'active_launch'),activeLaunch=readJsonAtHash(activeLaunchFile,activeLaunchHashBefore,'active_launch'),binding=activeLaunch.roi_session_binding,bindingKeys=contract.scientific_binding_fields;exactKeys(binding,bindingKeys,'active_launch.roi_session_binding');if(String(binding.project_id||'')!='" + jsEscape(v4ProjectId) + "'||String(binding.montage_revision_id||'')!='" + jsEscape(v4MasterRevisionId) + "'||String(binding.master_sha256||'').toLowerCase()!='" + jsEscape(v4MasterSha256) + "'||String(binding.coordinate_system||'')!='MASTER_PIXEL_COORDINATES_V1'||String(binding.toolset_version||'')!='5.6.0'||String(binding.studio_version||'')!='5.6.0'||!isArray(binding.master_dimensions)||binding.master_dimensions.length!=2||Number(binding.master_dimensions[0])!=" + getWidth() + "||Number(binding.master_dimensions[1])!=" + getHeight() + "||String(binding.master_dtype||'')=='')fail('active_launch.roi_session_binding','binding cientifico no vigente');var revisionFile=new File('" + jsEscape(v4MasterRevisionManifestPath) + "').getCanonicalFile(),scaleFile=new File('" + jsEscape(scaleReportPath) + "').getCanonicalFile(),masterFile=new File('" + jsEscape(v4MasterImage) + "').getCanonicalFile(),revisionHashBefore=shaFile(revisionFile,'revision_manifest.json'),scaleHashBefore=shaFile(scaleFile,'scale_reconciliation.json'),masterHashBefore=shaFile(masterFile,'montage_master.ome.tif'),scale=readJsonAtHash(scaleFile,scaleHashBefore,'scale_reconciliation.json');if(String(binding.revision_manifest_payload_sha256||'').toLowerCase()!='" + jsEscape(v4MasterRevisionManifestSha256) + "'||String(binding.revision_manifest_file_sha256||'').toLowerCase()!=revisionHashBefore||String(binding.master_sha256||'').toLowerCase()!=masterHashBefore||String(binding.scale_report_sha256||'').toLowerCase()!=scaleHashBefore||String(binding.scale_input_signature||'')!=String(scale.input_signature||'')||String(binding.calibration_id||'')!='" + jsEscape(v4CalibrationId) + "')fail('scientific_binding','revision, maestro, escala o calibracion no vigentes');var activeTool=activeLaunch.toolset;if(activeTool==null)fail('active_launch','toolset ausente');var activeToolSourceFile=new File(String(activeTool.source_path||'')).getCanonicalFile(),activeToolInstalledFile=new File(String(activeTool.installed_path||'')).getCanonicalFile(),activeToolSourceHashBefore=shaFile(activeToolSourceFile,'toolset source'),activeToolInstalledHashBefore=shaFile(activeToolInstalledFile,'toolset installed');if(activeTool.current!==true||String(activeTool.status||'')!='CURRENT'||String(activeTool.source_sha256||'').toLowerCase()!=String(binding.toolset_sha256||'').toLowerCase()||String(activeTool.installed_sha256||'').toLowerCase()!=String(binding.toolset_sha256||'').toLowerCase()||activeToolSourceHashBefore!=String(binding.toolset_sha256).toLowerCase()||activeToolInstalledHashBefore!=String(binding.toolset_sha256).toLowerCase())fail('active_launch','toolset no CURRENT o bytes distintos');";
    js = js + "var projectHashBefore=shaFile(projectFile,'project.json'),pointerHashBefore=shaFile(pointerFile,'current_roi_session.json'),bridgeHashBefore=shaFile(currentBridgeFile,'current_bridge.json'),project=readJsonAtHash(projectFile,projectHashBefore,'project.json'),bridge=readJsonAtHash(currentBridgeFile,bridgeHashBefore,'current_bridge.json');if(String(bridge.payload_sha256||'').toLowerCase()!=payloadHash(bridge))fail('current_bridge.json','payload_sha256 no coincide');var projectVersion=Number(project.project_version),bridgeGeneration=String(bridge.generation_id||''),generationRelative=String(bridge.generation_relative_path||'').replace(/\\\\/g,'/');if(!isFinite(projectVersion)||Math.floor(projectVersion)!=projectVersion||projectVersion<0||Number(bridge.project_version)!=projectVersion||String(project.project_id||'')!=String(binding.project_id)||String(bridge.project_id||'')!=String(binding.project_id)||String(bridge.revision_id||'')!=String(binding.montage_revision_id)||String(bridge.project_payload_sha256||'').toLowerCase()!=projectHashBefore||generationRelative!='fiji_bridge/generations/'+bridgeGeneration)fail('current_bridge.json','bridge vivo no coincide con project.json');var bridgeManifestFile=new File(root,generationRelative+'/bridge_generation_manifest.json').getCanonicalFile(),bridgeManifestHashBefore=shaFile(bridgeManifestFile,'bridge_generation_manifest.json'),bridgeManifest=readJsonAtHash(bridgeManifestFile,bridgeManifestHashBefore,'bridge_generation_manifest.json');if(bridgeManifestHashBefore!=String(bridge.generation_manifest_sha256||'').toLowerCase()||String(bridgeManifest.payload_sha256||'').toLowerCase()!=payloadHash(bridgeManifest)||String(bridgeManifest.generation_id||'')!=bridgeGeneration||String(bridgeManifest.project_id||'')!=String(binding.project_id)||String(bridgeManifest.revision_id||'')!=String(binding.montage_revision_id)||String(bridgeManifest.project_payload_sha256||'').toLowerCase()!=projectHashBefore||Number(bridgeManifest.project_version)!=projectVersion)fail('bridge_generation_manifest.json','generacion bridge viva incoherente');";
    js = js + "var pointer=readJsonAtHash(pointerFile,pointerHashBefore,'current_roi_session.json');exactKeys(pointer,contract.current_pointer_fields,'current_roi_session.json');if(String(pointer.payload_sha256||'').toLowerCase()!=payloadHash(pointer)||String(pointer.schema_version||'')!='cavity_current_roi_session_v1'||String(pointer.application_version||'')!='5.6.0'||String(pointer.publication_status||'')!='PUBLISHED'||!allowedState(pointer.review_status,pointer.quantitative_ready))fail('current_roi_session.json','schema o estado estructural no permitido');var roiState=project.roi_sessions;exactKeys(roiState,['schema_version','current_session_id','current_pointer_payload_sha256','current_quantitative_ready','updated_at'],'project.json.roi_sessions');if(String(project.application_version||'')!='5.6.0'||String(roiState.schema_version||'')!='cavity_project_roi_sessions_v1'||String(roiState.current_session_id||'')!=String(pointer.session_id)||String(roiState.current_pointer_payload_sha256||'').toLowerCase()!=String(pointer.payload_sha256||'').toLowerCase()||roiState.current_quantitative_ready!==pointer.quantitative_ready||String(roiState.updated_at||'').replace(/^\\s+|\\s+$/g,'')=='')fail('project.json.roi_sessions','project y pointer no designan la misma autoridad');var sessionId=String(pointer.session_id||'');if(!isGenerationId(sessionId)||String(pointer.project_id||'')!=String(binding.project_id)||String(pointer.montage_revision_id||'')!=String(binding.montage_revision_id)||String(pointer.master_sha256||'').toLowerCase()!=String(binding.master_sha256).toLowerCase())fail('current_roi_session.json','identidad o binding no vigente');var sessionRelative='sessions/roi_sessions/'+sessionId,manifestRelative=sessionRelative+'/roi_session_manifest.json';if(String(pointer.session_relative_path||'').replace(/\\\\/g,'/')!=sessionRelative||String(pointer.manifest_relative_path||'').replace(/\\\\/g,'/')!=manifestRelative)fail('current_roi_session.json','rutas no canonicas');var sessionsRoot=new File(new File(root,'sessions'),'roi_sessions').getCanonicalFile(),sessionDir=new File(root,sessionRelative).getCanonicalFile();if(!same(sessionDir.getParentFile(),sessionsRoot)||!sessionDir.isDirectory())fail('roi_session','generacion no hija directa');var manifestFile=new File(sessionDir,'roi_session_manifest.json').getCanonicalFile(),zipFile=new File(sessionDir,'rois.zip').getCanonicalFile(),indexFile=new File(sessionDir,'roi_index.json').getCanonicalFile(),listed=sessionDir.listFiles(),names=[];if(listed==null)fail('roi_session','no se puede listar');for(var li=0;li<listed.length;li++)names.push(String(listed[li].getName()));names.sort();if(names.join('|')!='roi_index.json|roi_session_manifest.json|rois.zip')fail('roi_session','inventario no exacto');var manifestHashBefore=shaFile(manifestFile,'roi_session_manifest.json'),zipHashBefore=shaFile(zipFile,'rois.zip'),indexHashBefore=shaFile(indexFile,'roi_index.json');if(manifestHashBefore!=String(pointer.manifest_sha256||'').toLowerCase())fail('roi_session_manifest.json','hash no coincide con pointer');var manifest=readJsonAtHash(manifestFile,manifestHashBefore,'roi_session_manifest.json');exactKeys(manifest,contract.roi_session_manifest_fields,'roi_session_manifest.json');if(String(manifest.payload_sha256||'').toLowerCase()!=payloadHash(manifest)||String(manifest.payload_sha256||'').toLowerCase()!=String(pointer.manifest_payload_sha256||'').toLowerCase()||String(manifest.schema_version||'')!='cavity_roi_session_v2'||String(manifest.application_version||'')!='5.6.0'||String(manifest.session_id||'')!=sessionId||String(manifest.source_type||'')!='CANONICAL_REQUEST'||String(manifest.publication_status||'')!='PUBLISHED'||!allowedState(manifest.review_status,manifest.quantitative_ready)||String(manifest.review_status)!=String(pointer.review_status)||manifest.quantitative_ready!==pointer.quantitative_ready||String(manifest.published_at||'')!=String(pointer.published_at||''))fail('roi_session_manifest.json','manifest y pointer no coinciden');";
    js = js + "exactKeys(manifest.binding,bindingKeys,'manifest.binding');for(var bk=0;bk<bindingKeys.length;bk++)if(stable(manifest.binding[bindingKeys[bk]])!=stable(binding[bindingKeys[bk]]))fail('manifest.binding','campo no vigente: '+bindingKeys[bk]);var creation=manifest.creation_context;exactKeys(creation,contract.creation_context_fields,'manifest.creation_context');if(!isFinite(Number(creation.project_version))||Math.floor(Number(creation.project_version))!=Number(creation.project_version)||Number(creation.project_version)<0||!isSha(creation.project_payload_sha256)||String(creation.bridge_generation_id||'')==''||!isSha(creation.bridge_manifest_sha256))fail('manifest.creation_context','snapshot historico no valido');var refs=project.references||{},calRel=String(refs.calibrations_file||'references/calibrations.json').replace(/\\\\/g,'/'),refsRoot=new File(root,'references').getCanonicalFile(),calFile=new File(root,calRel).getCanonicalFile();if(!inside(calFile,refsRoot))fail('calibration_record','registry fuera de references');var calibrationHashBefore=shaFile(calFile,'calibrations.json'),registry=readJsonAtHash(calFile,calibrationHashBefore,'calibrations.json'),calibrations=registry.calibrations,activeCalibration=String(refs.active_calibration_id||''),matches=[];if(!isArray(calibrations)||activeCalibration!=String(binding.calibration_id||''))fail('calibration_record','calibracion activa no coincide');for(var ci=0;ci<calibrations.length;ci++)if(String((calibrations[ci]||{}).calibration_id||'')==activeCalibration)matches.push(calibrations[ci]);if(matches.length!=1||shaText(stable(matches[0]))!=String(binding.calibration_record_sha256||'').toLowerCase()||stable(manifest.calibration_record)!=stable(matches[0]))fail('calibration_record','registro vivo, binding y manifest no coinciden');var sourceLaunch=manifest.source_launch;exactKeys(sourceLaunch,contract.source_launch_fields,'manifest.source_launch');requireVersion(sourceLaunch.fiji_imagej_version,'source_launch.fiji_imagej_version');requireVersion(sourceLaunch.java_version,'source_launch.java_version');var sourceLaunchRel=String(sourceLaunch.launch_record_relative_path||'').replace(/\\\\/g,'/'),sourceLaunchFile=new File(root,sourceLaunchRel).getCanonicalFile();if(!same(sourceLaunchFile.getParentFile(),bridgeDir)||String(sourceLaunchFile.getName()).indexOf('local_launch_')!=0||String(sourceLaunchFile.getName()).toLowerCase().substring(String(sourceLaunchFile.getName()).length-5)!='.json')fail('manifest.source_launch','ruta launch historico no canonica');var sourceLaunchHashBefore=shaFile(sourceLaunchFile,'source_launch');if(sourceLaunchHashBefore!=String(sourceLaunch.launch_record_sha256||'').toLowerCase())fail('manifest.source_launch','hash launch historico no coincide');var originLaunch=readJsonAtHash(sourceLaunchFile,sourceLaunchHashBefore,'source_launch'),originBinding=originLaunch.roi_session_binding;exactKeys(originBinding,bindingKeys,'source_launch.roi_session_binding');for(var ob=0;ob<bindingKeys.length;ob++)if(stable(originBinding[bindingKeys[ob]])!=stable(binding[bindingKeys[ob]]))fail('manifest.source_launch','binding historico distinto');var originTool=originLaunch.toolset;if(originTool==null||String(sourceLaunch.installed_toolset_path||'')!=String(originTool.installed_path||'')||String(sourceLaunch.installed_toolset_sha256||'').toLowerCase()!=String(originTool.installed_sha256||'').toLowerCase()||String(sourceLaunch.source_toolset_path||'')!=String(originTool.source_path||'')||String(sourceLaunch.source_toolset_sha256||'').toLowerCase()!=String(originTool.source_sha256||'').toLowerCase()||String(sourceLaunch.fiji_root||'')!=String(originLaunch.fiji_root||'')||String(sourceLaunch.fiji_executable||'')!=String(originLaunch.fiji_executable||'')||String(sourceLaunch.installed_toolset_sha256||'').toLowerCase()!=String(binding.toolset_sha256||'').toLowerCase()||String(sourceLaunch.source_toolset_sha256||'').toLowerCase()!=String(binding.toolset_sha256||'').toLowerCase())fail('manifest.source_launch','toolset o procedencia historica no coinciden');";
    js = js + "var artifacts=manifest.artifacts;exactKeys(artifacts,['rois.zip','roi_index.json'],'manifest.artifacts');var zipRecord=artifacts['rois.zip'],indexRecord=artifacts['roi_index.json'];exactKeys(zipRecord,['sha256','size_bytes'],'rois.zip record');exactKeys(indexRecord,['sha256','size_bytes'],'roi_index.json record');if(!isInteger(zipRecord.size_bytes)||zipRecord.size_bytes!=Number(zipFile.length())||String(zipRecord.sha256||'').toLowerCase()!=zipHashBefore||!isInteger(indexRecord.size_bytes)||indexRecord.size_bytes!=Number(indexFile.length())||String(indexRecord.sha256||'').toLowerCase()!=indexHashBefore)fail('manifest.artifacts','hash o tamano no coincide');var inspected=inspectZip(zipFile),index=readJsonAtHash(indexFile,indexHashBefore,'roi_index.json');exactKeys(index,contract.roi_index_fields,'roi_index.json');if(String(index.payload_sha256||'').toLowerCase()!=payloadHash(index)||String(index.schema_version||'')!='cavity_roi_index_v2'||String(index.application_version||'')!='5.6.0'||!isInteger(index.geometry_precision_decimals)||index.geometry_precision_decimals!=6||!isArray(index.rois)||index.rois.length==0)fail('roi_index.json','schema o filas no validas');exactKeys(index.binding,bindingKeys,'index.binding');for(var ik=0;ik<bindingKeys.length;ik++)if(stable(index.binding[bindingKeys[ik]])!=stable(binding[bindingKeys[ik]]))fail('index.binding','campo no vigente: '+bindingKeys[ik]);var seen={},seenSemantic={},semantic=[],roles={},pending=0,reviewed=0,lastSort='';for(var ri=0;ri<index.rois.length;ri++){var row=index.rois[ri];exactKeys(row,contract.roi_index_row_fields,'roi_index.row');exactKeys(row.canonical_geometry_methods,contract.canonical_geometry_method_fields,'roi_index.row.canonical_geometry_methods');exactKeys(row.fiji_observation,contract.fiji_observation_fields,'roi_index.row.fiji_observation');exactKeys(row.fiji_observation.area,contract.fiji_metric_observation_fields,'roi_index.row.fiji_observation.area');exactKeys(row.fiji_observation.perimeter,contract.fiji_metric_observation_fields,'roi_index.row.fiji_observation.perimeter');var name=String(row.entry_name||''),binary=inspected.entries[name],review=String(row.review_status||''),role=String(row.scientific_role||''),uuid=String(row.object_uuid||'').toLowerCase(),objectId=String(row.object_id||''),sortKey=role+'\\u0000'+objectId+'\\u0000'+uuid,geometryClass=String((row.geometry||{}).geometry_class||''),roiType=String(row.imagej_roi_type||''),classAllowed=geometryClass==roiType||(roiType=='rectangle'&&geometryClass=='rounded_rectangle');if(binary==null||String(row.entry_sha256||'').toLowerCase()!=binary.sha256||!isInteger(row.entry_size_bytes)||row.entry_size_bytes!=Number(binary.size_bytes)||seen[name.toLowerCase()]||seenSemantic[String(row.semantic_sha256||'').toLowerCase()]||!isSha(row.semantic_sha256)||contract.row_review_statuses.indexOf(review)<0||!classAllowed)fail('roi_index.row','binario, identidad, estado o clase geometrica no validos');if(lastSort!=''&&sortKey<lastSort)fail('roi_index.json','orden de filas no canonico');lastSort=sortKey;seen[name.toLowerCase()]=1;seenSemantic[String(row.semantic_sha256).toLowerCase()]=1;semantic.push(String(row.semantic_sha256));roles[role]=Number(roles[role]||0)+1;if(review=='pending')pending++;else reviewed++;var semanticPayload={object_uuid:uuid,object_id:objectId,imagej_roi_type:String(row.imagej_roi_type),scientific_role:role,roi_set_id:String(row.roi_set_id),object_class:String(row.object_class),object_subtype:String(row.object_subtype),geometry:semanticGeometry(row.geometry),bounding_box:semanticGeometry(row.bounding_box),centroid:semanticGeometry(row.centroid),area_px2:semanticGeometry(row.area_px2),perimeter_px:semanticGeometry(row.perimeter_px),project_id:String(row.project_id),montage_revision_id:String(row.montage_revision_id),master_sha256:String(row.master_sha256).toLowerCase(),master_dimensions:row.master_dimensions,master_dtype:String(row.master_dtype),coordinate_system:String(row.coordinate_system),review_status:review,include_in_statistics:row.include_in_statistics,canonical_geometry_methods:semanticGeometry(row.canonical_geometry_methods)};if(String(row.semantic_sha256).toLowerCase()!=shaText(stable(semanticPayload)))fail('roi_index.row','semantic_sha256 no coincide');}if(index.rois.length!=inspected.count||!isInteger(manifest.roi_count)||manifest.roi_count!=inspected.count)fail('roi_session_manifest.json','roi_count no coincide');var inventory={},inventoryNames=[];for(var en in inspected.entries)if(Object.prototype.hasOwnProperty.call(inspected.entries,en))inventoryNames.push(en);inventoryNames.sort();for(var ii=0;ii<inventoryNames.length;ii++){var item=inspected.entries[inventoryNames[ii]];inventory[inventoryNames[ii]]={sha256:item.sha256,size_bytes:item.size_bytes};}semantic.sort();if(String(manifest.binary_inventory_sha256||'').toLowerCase()!=shaText(stable(inventory))||stable(manifest.semantic_fingerprints)!=stable(semantic)||stable(manifest.role_counts)!=stable(roles))fail('roi_session_manifest.json','inventario, roles o fingerprints no coinciden');";
    js = js + "var rowBindingKeys=['project_id','montage_revision_id','master_sha256','master_dimensions','master_dtype','coordinate_system'],allowedRoles=['object','region','line_feature','reference_feature','surface','scale_reference','metadata'],rowByName={},seenUuidExact={},seenRoleObject={};for(var rv=0;rv<index.rois.length;rv++){var validatedRow=index.rois[rv],validatedName=String(validatedRow.entry_name||''),validatedUuid=String(validatedRow.object_uuid||'').toLowerCase(),validatedRole=String(validatedRow.scientific_role||''),validatedObjectId=String(validatedRow.object_id||''),validatedRoleObject=(validatedRole+'\\u0000'+validatedObjectId).toLowerCase();if(!isUuid(validatedUuid)||seenUuidExact[validatedUuid]||allowedRoles.indexOf(validatedRole)<0||validatedObjectId.replace(/^\\s+|\\s+$/g,'')==''||seenRoleObject[validatedRoleObject])fail('roi_index.row','UUID, rol u object_id invalido o duplicado');seenUuidExact[validatedUuid]=1;seenRoleObject[validatedRoleObject]=1;if(String(validatedRow.roi_set_id||'').replace(/^\\s+|\\s+$/g,'')==''||String(validatedRow.object_class||'').replace(/^\\s+|\\s+$/g,'')==''||String(validatedRow.object_subtype||'').replace(/^\\s+|\\s+$/g,'')==''||String(validatedRow.created_time||'').replace(/^\\s+|\\s+$/g,'')==''||String(validatedRow.modified_time||'').replace(/^\\s+|\\s+$/g,'')==''||typeof validatedRow.include_in_statistics!='boolean')fail('roi_index.row','metadatos o inclusion incompletos');for(var rb=0;rb<rowBindingKeys.length;rb++){var rowBindingKey=rowBindingKeys[rb];if(stable(validatedRow[rowBindingKey])!=stable(binding[rowBindingKey]))fail('roi_index.row','binding de fila distinto: '+rowBindingKey);}var canonicalGeometryFields=['geometry_class','vertices_px'];if(String((validatedRow.geometry||{}).geometry_class||'')=='rounded_rectangle')canonicalGeometryFields.push('rounded_rect_arc_size_px');exactKeys(validatedRow.geometry,canonicalGeometryFields,'roi_index.row.geometry');if(String(validatedRow.geometry.geometry_class||'').replace(/^\\s+|\\s+$/g,'')=='')fail('roi_index.row.geometry','clase ausente');validateVertices(validatedRow.geometry.vertices_px,'roi_index.row.geometry');finiteObject(validatedRow.bounding_box,['x','y','width','height'],'roi_index.row.bounding_box');if(Number(validatedRow.bounding_box.width)<0||Number(validatedRow.bounding_box.height)<0)fail('roi_index.row.bounding_box','dimension negativa');finiteObject(validatedRow.centroid,['x','y'],'roi_index.row.centroid');var areaNull=validatedRow.area_px2===null,perimeterNull=validatedRow.perimeter_px===null;if(areaNull!=perimeterNull||(!areaNull&&(typeof validatedRow.area_px2!='number'||!isFinite(validatedRow.area_px2)||Number(validatedRow.area_px2)<0||typeof validatedRow.perimeter_px!='number'||!isFinite(validatedRow.perimeter_px)||Number(validatedRow.perimeter_px)<0)))fail('roi_index.row','metricas canonicas invalidas');for(var cm=0;cm<contract.canonical_geometry_method_fields.length;cm++)if(String(validatedRow.canonical_geometry_methods[contract.canonical_geometry_method_fields[cm]]||'').replace(/^\\s+|\\s+$/g,'')=='')fail('roi_index.row.canonical_geometry_methods','metodo vacio');validateObservation(validatedRow.fiji_observation,'roi_index.row.fiji_observation');if(String(validatedRow.fiji_observation.imagej_roi_type)!=String(validatedRow.imagej_roi_type))fail('roi_index.row.fiji_observation','tipo distinto de la fila');rowByName[validatedName]=validatedRow;}";
    js = js + "exactKeys(manifest.review_counts,contract.review_count_fields,'manifest.review_counts');if(Number(manifest.review_counts.pending)!=pending||Number(manifest.review_counts.reviewed)!=reviewed)fail('manifest.review_counts','recuentos no coinciden con las filas');var geometry=manifest.geometry_validation;exactKeys(geometry,contract.geometry_validation_fields,'manifest.geometry_validation');exactKeys(geometry.metric_tolerances,contract.geometry_metric_tolerance_fields,'geometry.metric_tolerances');if(!isArray(geometry.entries)||!isArray(geometry.blockers)||geometry.entries.length!=index.rois.length)fail('manifest.geometry_validation','resumen geometrico incompleto');var derivedSupportedCount=0,derivedUnsupportedCount=0,derivedGeometryBlockerSet={},derivedGeometryBlockers=[],previousGeometryEntry='';for(var ge=0;ge<geometry.entries.length;ge++){var geometryEntry=geometry.entries[ge],geometryEntryName=String(geometryEntry.entry_name||'');exactKeys(geometryEntry,contract.geometry_entry_fields,'geometry.entry');exactKeys(geometryEntry.area,contract.geometry_metric_fields,'geometry.entry.area');exactKeys(geometryEntry.perimeter,contract.geometry_metric_fields,'geometry.entry.perimeter');if(!isArray(geometryEntry.blockers)||geometryEntryName==''||(previousGeometryEntry!=''&&geometryEntryName<=previousGeometryEntry))fail('geometry.entry','identidad, orden o blockers no validos');previousGeometryEntry=geometryEntryName;if(geometryEntry.supported===true){var areaResult=String(geometryEntry.area.result||''),perimeterResult=String(geometryEntry.perimeter.result||'');if(geometryEntry.blockers.length!=0||['MATCH','DIAGNOSTIC_ONLY'].indexOf(areaResult)<0||['MATCH','DIAGNOSTIC_ONLY'].indexOf(perimeterResult)<0||!isFinite(Number(geometryEntry.area.derived))||Number(geometryEntry.area.derived)<0||!isFinite(Number(geometryEntry.perimeter.derived))||Number(geometryEntry.perimeter.derived)<0)fail('geometry.entry','entrada supported sin derivacion canonica Python');derivedSupportedCount++;}else if(geometryEntry.supported===false){if(geometryEntry.blockers.length==0||String(geometryEntry.area.result||'')!='UNSUPPORTED'||String(geometryEntry.perimeter.result||'')!='UNSUPPORTED')fail('geometry.entry','entrada unsupported sin bloqueo y metricas UNSUPPORTED');var previousEntryBlocker='';for(var geb=0;geb<geometryEntry.blockers.length;geb++){var entryBlocker=String(geometryEntry.blockers[geb]||'');if(entryBlocker==''||(previousEntryBlocker!=''&&entryBlocker<=previousEntryBlocker))fail('geometry.entry','blockers no canonicos');previousEntryBlocker=entryBlocker;derivedGeometryBlockerSet[entryBlocker]=1;}derivedUnsupportedCount++;}else fail('geometry.entry','supported debe ser booleano');}for(var derivedBlocker in derivedGeometryBlockerSet)if(Object.prototype.hasOwnProperty.call(derivedGeometryBlockerSet,derivedBlocker))derivedGeometryBlockers.push(derivedBlocker);derivedGeometryBlockers.sort();var suppliedGeometryBlockers=[];for(var gb=0;gb<geometry.blockers.length;gb++){var suppliedBlocker=String(geometry.blockers[gb]||'');if(suppliedBlocker==''||(gb>0&&suppliedBlocker<=suppliedGeometryBlockers[gb-1]))fail('manifest.geometry_validation','blockers superiores no canonicos');suppliedGeometryBlockers.push(suppliedBlocker);}if(Number(geometry.supported_count)!=derivedSupportedCount||Number(geometry.unsupported_count)!=derivedUnsupportedCount||derivedSupportedCount+derivedUnsupportedCount!=index.rois.length||stable(suppliedGeometryBlockers)!=stable(derivedGeometryBlockers))fail('manifest.geometry_validation','conteos o union de blockers no derivados de entries');var geometrySeen={};for(var gl=0;gl<geometry.entries.length;gl++){var linkedGeometry=geometry.entries[gl],linkedName=String(linkedGeometry.entry_name||''),linkedRow=rowByName[linkedName];if(linkedRow==null||geometrySeen[linkedName]||String(linkedGeometry.imagej_roi_type||'')!=String(linkedRow.imagej_roi_type)||String(linkedGeometry.geometry_class||'')!=String(linkedRow.geometry.geometry_class))fail('manifest.geometry_validation','entrada geometrica no ligada a fila');geometrySeen[linkedName]=1;if(linkedGeometry.supported===true){if(linkedRow.area_px2===null||linkedRow.perimeter_px===null||Number(linkedGeometry.area.derived)!=Number(linkedRow.area_px2)||Number(linkedGeometry.perimeter.derived)!=Number(linkedRow.perimeter_px))fail('manifest.geometry_validation','metricas derivadas no ligadas a fila');}else if(linkedRow.area_px2!==null||linkedRow.perimeter_px!==null)fail('manifest.geometry_validation','fila unsupported contiene metricas');}var geometryBlockers=derivedGeometryBlockers.length,derivedReady=pending==0&&geometryBlockers==0,derivedReview=derivedReady?'VERIFIED':'REVIEW_REQUIRED';if(String(geometry.status||'')!=(geometryBlockers==0?'VERIFIED':'REVIEW_REQUIRED')||String(manifest.review_status||'')!=derivedReview||manifest.quantitative_ready!==derivedReady)fail('manifest.geometry_validation','estado global no derivado de pending y blockers');";
    js = js + "var sourceRequest=manifest.source_request;exactKeys(sourceRequest,contract.source_request_fields,'manifest.source_request');var requestId=String(sourceRequest.request_id||''),requestRelative=String(sourceRequest.request_relative_path||'').replace(/\\\\/g,'/'),expectedRequestRelative='sessions/roi_session_requests/'+requestId,requestsRoot=new File(new File(root,'sessions'),'roi_session_requests').getCanonicalFile(),requestDir=new File(root,requestRelative).getCanonicalFile();if(!isGenerationId(requestId)||requestRelative!=expectedRequestRelative||!same(requestDir.getParentFile(),requestsRoot)||!requestDir.isDirectory())fail('manifest.source_request','request historica no canonica');var requestFiles=requestDir.listFiles(),requestNames=[];if(requestFiles==null)fail('manifest.source_request','request ausente');for(var rq=0;rq<requestFiles.length;rq++)requestNames.push(String(requestFiles[rq].getName()));requestNames.sort();if(requestNames.join('|')!='commit_request.json|request_result.json|roi_index.candidate.json|rois.candidate.zip')fail('manifest.source_request','inventario request no exacto');var commitFile=new File(requestDir,'commit_request.json').getCanonicalFile(),candidateZip=new File(requestDir,'rois.candidate.zip').getCanonicalFile(),candidateIndex=new File(requestDir,'roi_index.candidate.json').getCanonicalFile(),resultFile=new File(requestDir,'request_result.json').getCanonicalFile(),commitHashBefore=shaFile(commitFile,'commit_request.json'),candidateZipHashBefore=shaFile(candidateZip,'rois.candidate.zip'),candidateIndexHashBefore=shaFile(candidateIndex,'roi_index.candidate.json'),resultHashBefore=shaFile(resultFile,'request_result.json'),candidateZipSizeBefore=Number(candidateZip.length()),candidateIndexSizeBefore=Number(candidateIndex.length()),request=readJsonAtHash(commitFile,commitHashBefore,'commit_request.json');exactKeys(request,contract.commit_request_fields,'commit_request.json');if(String(request.payload_sha256||'').toLowerCase()!=payloadHash(request)||String(request.payload_sha256||'').toLowerCase()!=String(sourceRequest.commit_request_payload_sha256||'').toLowerCase()||String(request.candidate_zip_sha256||'').toLowerCase()!=String(sourceRequest.candidate_zip_sha256||'').toLowerCase()||String(request.candidate_index_sha256||'').toLowerCase()!=String(sourceRequest.candidate_index_sha256||'').toLowerCase()||String(request.candidate_zip_sha256||'').toLowerCase()!=candidateZipHashBefore||String(request.candidate_index_sha256||'').toLowerCase()!=candidateIndexHashBefore||String(request.launch_record_relative_path||'').replace(/\\\\/g,'/')!=sourceLaunchRel||String(request.launch_record_sha256||'').toLowerCase()!=String(sourceLaunch.launch_record_sha256||'').toLowerCase()||stable(request.creation_context)!=stable(creation)||String(request.fiji_imagej_version||'')!=String(sourceLaunch.fiji_imagej_version||'')||String(request.java_version||'')!=String(sourceLaunch.java_version||''))fail('manifest.source_request','request, launch y manifest no describen la misma creacion');";
    js = js + "if(String(request.prepared_at||'').replace(/^\\s+|\\s+$/g,'')=='')fail('commit_request.json','prepared_at ausente');";
    js = js + "if(String(request.schema_version||'')!='cavity_roi_session_request_v2'||String(request.application_version||'')!='5.6.0'||String(request.request_id||'')!=requestId||!isGenerationId(request.request_id)||String(request.prepared_by||'').replace(/^\\s+|\\s+$/g,'')==''||String(request.reason||'').replace(/^\\s+|\\s+$/g,'')==''||!isInteger(request.candidate_zip_size_bytes)||request.candidate_zip_size_bytes!=candidateZipSizeBefore||!isInteger(request.candidate_index_size_bytes)||request.candidate_index_size_bytes!=candidateIndexSizeBefore||String(request.candidate_zip_sha256||'').toLowerCase()!=zipHashBefore)fail('commit_request.json','schema, identidad, tamanos o ZIP publicado no coinciden');var draft=readJsonAtHash(candidateIndex,candidateIndexHashBefore,'roi_index.candidate.json');exactKeys(draft,contract.roi_request_draft_fields,'roi_index.candidate.json');if(String(draft.payload_sha256||'').toLowerCase()!=payloadHash(draft)||String(draft.schema_version||'')!='cavity_roi_request_draft_v1'||String(draft.application_version||'')!='5.6.0'||draft.authoritative!==false||!isArray(draft.rois)||draft.rois.length!=index.rois.length)fail('roi_index.candidate.json','schema, hash, autoridad o filas invalidas');exactKeys(draft.binding,bindingKeys,'draft.binding');for(var db=0;db<bindingKeys.length;db++)if(stable(draft.binding[bindingKeys[db]])!=stable(binding[bindingKeys[db]]))fail('draft.binding','campo no vigente: '+bindingKeys[db]);var draftSeen={},draftUuid={},draftRoleObject={},draftLastSort='';for(var dr=0;dr<draft.rois.length;dr++){var draftRow=draft.rois[dr];exactKeys(draftRow,contract.roi_request_draft_row_fields,'roi_index.candidate.row');var draftName=String(draftRow.entry_name||''),draftFinal=rowByName[draftName],draftBinary=inspected.entries[draftName],draftUuidValue=String(draftRow.object_uuid||'').toLowerCase(),draftRole=String(draftRow.scientific_role||''),draftObjectId=String(draftRow.object_id||''),draftRoleKey=(draftRole+'\\u0000'+draftObjectId).toLowerCase(),draftSort=draftRole+'\\u0000'+draftObjectId+'\\u0000'+draftUuidValue;if(draftFinal==null||draftBinary==null||draftSeen[draftName.toLowerCase()]||draftUuid[draftUuidValue]||draftRoleObject[draftRoleKey]||!isUuid(draftUuidValue)||!isSha(draftRow.entry_sha256)||String(draftRow.entry_sha256).toLowerCase()!=draftBinary.sha256||!isInteger(draftRow.entry_size_bytes)||draftRow.entry_size_bytes!=Number(draftBinary.size_bytes)||(draftLastSort!=''&&draftSort<draftLastSort))fail('roi_index.candidate.row','identidad, binario u orden no canonico');draftSeen[draftName.toLowerCase()]=1;draftUuid[draftUuidValue]=1;draftRoleObject[draftRoleKey]=1;draftLastSort=draftSort;validateObservation(draftRow.fiji_observation,'roi_index.candidate.row.fiji_observation');for(var dl=0;dl<contract.roi_request_draft_row_fields.length;dl++){var linkedField=contract.roi_request_draft_row_fields[dl];if(stable(draftRow[linkedField])!=stable(draftFinal[linkedField]))fail('roi_index.candidate.row','draft y fila canonica divergen en '+linkedField);}}var requestResult=readJsonAtHash(resultFile,resultHashBefore,'request_result.json');exactKeys(requestResult,contract.request_result_fields,'request_result.json');if(String(requestResult.payload_sha256||'').toLowerCase()!=payloadHash(requestResult)||String(requestResult.schema_version||'')!='cavity_roi_session_request_result_v2'||String(requestResult.application_version||'')!='5.6.0'||String(requestResult.request_id||'')!=requestId||String(requestResult.session_id||'')!=sessionId||String(requestResult.manifest_sha256||'').toLowerCase()!=manifestHashBefore||String(requestResult.manifest_payload_sha256||'').toLowerCase()!=String(manifest.payload_sha256||'').toLowerCase()||String(requestResult.published_at||'')!=String(manifest.published_at||'')||String(requestResult.operator||'')!=String(request.prepared_by||'')||String(requestResult.result||'')!='PUBLISHED'||String(requestResult.review_status||'')!=String(manifest.review_status||'')||requestResult.quantitative_ready!==manifest.quantitative_ready)fail('request_result.json','resultado idempotente no coincide con request y sesion');";
    js = js + "var runtimeFijiVersion=requireVersion(String(Packages.ij.IJ.getVersion()),'active_runtime.fiji_imagej_version'),runtimeJavaVersion=requireVersion(String(Packages.java.lang.System.getProperty('java.version')),'active_runtime.java_version');if(runtimeFijiVersion!=String(sourceLaunch.fiji_imagej_version||'')||runtimeJavaVersion!=String(sourceLaunch.java_version||''))fail('active_runtime','versiones Fiji/ImageJ o Java distintas de la sesion de origen');if(shaFile(projectFile,'project.json')!=projectHashBefore||shaFile(pointerFile,'current_roi_session.json')!=pointerHashBefore||shaFile(currentBridgeFile,'current_bridge.json')!=bridgeHashBefore||shaFile(bridgeManifestFile,'bridge_generation_manifest.json')!=bridgeManifestHashBefore||shaFile(activeLaunchFile,'active_launch')!=activeLaunchHashBefore||shaFile(activeToolSourceFile,'toolset source')!=activeToolSourceHashBefore||shaFile(activeToolInstalledFile,'toolset installed')!=activeToolInstalledHashBefore||shaFile(revisionFile,'revision_manifest.json')!=revisionHashBefore||shaFile(scaleFile,'scale_reconciliation.json')!=scaleHashBefore||shaFile(masterFile,'montage_master.ome.tif')!=masterHashBefore||shaFile(calFile,'calibrations.json')!=calibrationHashBefore||shaFile(sourceLaunchFile,'source_launch')!=sourceLaunchHashBefore||shaFile(manifestFile,'roi_session_manifest.json')!=manifestHashBefore||shaFile(zipFile,'rois.zip')!=zipHashBefore||shaFile(indexFile,'roi_index.json')!=indexHashBefore||shaFile(commitFile,'commit_request.json')!=commitHashBefore||shaFile(candidateZip,'rois.candidate.zip')!=candidateZipHashBefore||shaFile(candidateIndex,'roi_index.candidate.json')!=candidateIndexHashBefore||shaFile(resultFile,'request_result.json')!=resultHashBefore)fail('validation','el contexto cambio durante la lectura');OUT='OK|'+canon(zipFile)+'|'+String(inspected.count)+'|'+derivedReview+'|'+(derivedReady?'1':'0')+'|'+String(pending)+'|'+String(geometryBlockers);}catch(ex){OUT='ERROR|'+clean(lastLabel)+'|'+clean(ex);}finally{try{if(zip!=null)zip.close();}catch(ignore){}}String(OUT);";
    result = "" + eval("js", js);
    parts = split(result, "|");
    if (parts.length < 7 || parts[0] != "OK") { v56SessionValidationError = result; return 0; }
    v56ResolvedSessionZip = normalizeStoredPath(parts[1]);
    v56ResolvedSessionRoiCount = round(parseFloat(parts[2]));
    v56ResolvedSessionReviewStatus = parts[3];
    v56ResolvedSessionQuantitativeReady = round(parseFloat(parts[4]));
    v56ResolvedSessionPendingCount = round(parseFloat(parts[5]));
    v56ResolvedSessionGeometryBlockerCount = round(parseFloat(parts[6]));
    return 1;
}

function v56RequireCurrentSessionQuantitative(actionText, showErrors) {
    if (!v56RefreshLiveBridgeForRoiWorkflow(actionText)) return 0;
    if (!v56ResolveCurrentSessionJava()) {
        if (showErrors) showMessage("Autorizacion cuantitativa bloqueada", "No se puede " + actionText + ".\n\n" + v56SessionValidationError);
        return 0;
    }
    if (v56ResolvedSessionReviewStatus != "VERIFIED" ||
        v56ResolvedSessionQuantitativeReady != 1 ||
        v56ResolvedSessionPendingCount != 0 ||
        v56ResolvedSessionGeometryBlockerCount != 0) {
        if (showErrors) showMessage("Autorizacion cuantitativa bloqueada", "La sesion current es integra y puede cargarse para editar, pero no esta autorizada para cuantificar.\n\nEstado: " + v56ResolvedSessionReviewStatus + "\nPending: " + v56ResolvedSessionPendingCount + "\nBloqueos geometricos: " + v56ResolvedSessionGeometryBlockerCount);
        return 0;
    }
    return 1;
}

function v56RestoreRuntimeFromCanonicalRois() {
    snapshotCurrentView();
    metadataIndex = findMetadataIndex();
    if (metadataIndex < -1) { showStatus("CTL P1 METADATA_INVENTORY_AMBIGUOUS: runtime no restaurado."); return; }
    if (metadataIndex >= 0) {
        if (!p1SelectMetadataIndexExact(metadataIndex)) { showStatus("CTL P1 METADATA_SELECTION_FAILED: runtime no restaurado."); return; }
        readMetadataFromSelectedRoi();
    }
    if (loadScaleReferenceFromRois()) rebuildScaleLabelFromReference(0);
    loadSurfaceReferenceFromRois();
    updateScaleMaybe();
    recalculateCounters();
    restyleAllRois();
    showAllRois();
    restoreViewSnapshot();
    installInteractionListeners(0);
    refreshControlPanelStatus();
}

function v4SaveSession() {
    return v56PrepareRoiSessionRequest("Fiji V9 save session");
}

function v4LoadSession() {
    if (!v4EnsureProject()) return 0;
    if (!v56RefreshLiveBridgeForRoiWorkflow("cargar la sesion current")) return 0;
    if (!v4RequireCurrentRevisionBinding("cargar la sesion current", 1)) return 0;
    if (!v56ResolveCurrentSessionJava()) {
        run("ROI Manager...");
        roiManager("reset");
        showMessage("Sesion incompatible", v56SessionValidationError + "\n\nEl ROI Manager se ha vaciado. No se ha intentado cargar ningun ZIP legacy plano.");
        return 0;
    }
    run("ROI Manager...");
    if (roiManager("count") > 0 && !getBoolean("La sesion current ha sido validada. Para cargarla es obligatorio vaciar el ROI Manager actual.", "Vaciar y cargar", "Cancelar")) return 0;
    roiManager("reset");
    // Re-resolve after the human dialog. A changed pointer or binding aborts.
    if (!v56ResolveCurrentSessionJava()) {
        roiManager("reset");
        showMessage("Sesion current cambiada", v56SessionValidationError + "\n\nEl ROI Manager permanece vacio.");
        return 0;
    }
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "abrir la sesion current", 1)) { roiManager("reset"); return 0; }
    roiManager("open", v56ResolvedSessionZip);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar de abrir la sesion current", 1)) { roiManager("reset"); return 0; }
    if (roiManager("count") != v56ResolvedSessionRoiCount || v4CountForeignProjectRois() > 0 || v4CountRevisionBindingMismatches() > 0) {
        roiManager("reset");
        showMessage("Sesion current incompatible", "Las ROI abiertas no coinciden con el indice o con el binding vigente. El ROI Manager se ha vaciado.");
        return 0;
    }
    loadedDraft = v56CollectRoiDraftJson();
    if (loadedDraft == "") {
        roiManager("reset");
        showMessage("Sesion current incompleta", v56RoiDraftError + "\n\nEl ROI Manager se ha vaciado.");
        return 0;
    }
    v56RestoreRuntimeFromCanonicalRois();
    if (v56ResolvedSessionReviewStatus == "REVIEW_REQUIRED") {
        showStatus("Sesion current integra pendiente de revisar cargada.");
        showMessage("Sesion pendiente de revision", "Sesion integra, pendiente de revisar; no autorizada para cuantificar.\n\nPuede continuar editando y revisando las ROI. Guarde una nueva request y publiquela desde Studio cuando termine.");
    } else {
        showStatus("Sesion current VERIFIED y autorizada cargada.");
    }
    return 1;
}

function v4CountForeignProjectRois() {
    run("ROI Manager...");
    foreignCount = 0;
    foreignTotal = roiManager("count");
    for (foreignIndex=0; foreignIndex<foreignTotal; foreignIndex++) {
        if (!safeRoiSelect(foreignIndex)) continue;
        foreignId = Roi.getProperty("Project_id");
        if (foreignId != "" && foreignId != v4ProjectId) foreignCount++;
    }
    return foreignCount;
}

function v4SessionPath() {
    v4SessionsDirText = projectAwareJoinPath(v4ProjectDir, "sessions");
    v4SessionFileText = projectAwareJoinPath(v4SessionsDirText, "current_roi_session.json");
    return "" + v4SessionFileText;
}

function v4QuickAudit() {
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("auditar las ROI", 1)) return;
    run("ROI Manager..."); n=roiManager("count");
    missingId=0; missingType=0; missingSet=0; invalidSize=0; invalidPosition=0; duplicates=0; unreviewed=0; panelBoundary=0; pendingLegacy=0;
    for(i=0;i<n;i++) {
        safeRoiSelect(i);
        type=Roi.getProperty("Object_type"); if(type=="") type=currentRoiType();
        if(type=="session_metadata" || type=="scale_label") continue;
        if(propString("Object_id","")=="") missingId++;
        if(type=="") missingType++;
        if(propString("ROI_set_id","")=="") missingSet++;
        if(propNumber("Size_valid",1)==0) invalidSize++;
        if(propNumber("Position_valid",1)==0) invalidPosition++;
        if(propString("Duplicate_status","clear")=="suspect") duplicates++;
        if(propString("Review_status","")=="" || propString("Review_status","")=="pending") unreviewed++;
        if(propNumber("Crosses_panel_boundary",0)>0) panelBoundary++;
        if(startsWith(toLowerCase(Roi.getName),"__v4_pending__")) pendingLegacy++;
    }
    errors=missingId+missingType+missingSet;
    text="Proyecto: "+v4ProjectName+"\nROIs: "+n+"\n\n";
    text=text+"Identificador ausente: "+missingId+"\nTipo ausente: "+missingType+"\nConjunto ausente: "+missingSet+"\n";
    text=text+"Tamano no valido: "+invalidSize+"\nPosicion no valida: "+invalidPosition+"\nDuplicados sospechosos: "+duplicates+"\nPendientes de revision: "+unreviewed+"\nCruzan frontera efectiva de panel: "+panelBoundary+"\nROIs legacy __V4_PENDING__: "+pendingLegacy+"\n";
    if(!surfaceDefined) text=text+"\nADVERTENCIA: superficie no cargada.\n";
    if(!v4SurfaceOriginDefined) text=text+"ADVERTENCIA: origen s=0 no definido.\n";
    if(isNaN(v4PixelWidth)||v4PixelWidth<=0) text=text+"ERROR: calibracion no definida.\n";
    else if(!v4ScaleMeasurementAllowed || !v4CheckImageScaleAgainstProject(0)) text=text+"ERROR: calibracion de proyecto no conciliada con la imagen activa.\n";
    else text=text+"OK: calibracion conciliada; una barra/referencia dibujada es opcional.\n";
    if(!v4OwnershipCertified || !v4PanelQuantitativeReady || !File.exists(v4OwnershipImage)) text=text+"ERROR: ownership de panel no certificado; no use densidades de area.\n";
    else text=text+"OK: ownership certificado para area y asignacion efectiva.\n";
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "publicar la auditoria Fiji", 1)) return;
    report=projectAwareJoinPath(projectAwareJoinPath(v4ProjectDir,"qc"),"fiji_roi_audit_v4.txt");
    makeDirIfMissing(projectAwareJoinPath(v4ProjectDir,"qc")); File.saveString(text,report);
    if (!v55ProjectBridgeMarkerClear(v4ProjectDir, "terminar la auditoria Fiji", 1)) return;
    showMessage("Auditoria de Fiji",text+"\nInforme: "+report);
}

function v4Timestamp() {
    getDateAndTime(year,month,dayOfWeek,dayOfMonth,hour,minute,second,msec);
    return year+IJ.pad(month+1,2)+IJ.pad(dayOfMonth,2)+"_"+IJ.pad(hour,2)+IJ.pad(minute,2)+IJ.pad(second,2);
}

function v4EnsureProject() {
    if (v4ProjectSwitchInProgress) {
        if (v4ProjectLoaded && v4ProjectDir != "") return v55ProjectBridgeMarkerClear(v4ProjectDir, "guardar la sesion del proyecto anterior", 1);
        return 0;
    }
    hadProjectContext = v4ProjectLoaded || v4ProjectDir != "";
    imageProjectRoot = v4FindProjectRootFromCurrentImage();
    if (v4SynchronizeProjectContext()) return 1;
    if (hadProjectContext || imageProjectRoot != "") return 0;
    v4OpenProject();
    if (!v4ProjectLoaded || v4ProjectDir == "") return 0;
    return v55RequireActiveImageProjectContext(v4ProjectDir, "usar el proyecto abierto", 1);
}


// --- Image enhancement tools ---
// Cavity_Image_Enhancement_Tools_v4_0.ijm
// Non-destructive visualization helpers for TEM cavities and line defects.
// Every operation is applied to a duplicate; the acquisition/master image is
// never overwritten by these commands.

var imageToolsVersion = "5.6.0";
var imageToolsLastRecipe = "";
var imageToolsLastPurpose = "visualization_only";
var imageToolsLastSource = "";

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.

// [Cavity TEM Light] Legacy visible macro removed from this focused branch.


function imageToolsPanel() {
    if (nImages() <= 0) { showMessage("Sin imagen", "Abra una imagen TEM antes de crear vistas de analisis."); return; }
    actions = newArray(
        "Vista de cavidades: fondo + suavizado + realce",
        "DoG multiescala para cavidades claras",
        "DoG multiescala para cavidades oscuras",
        "Crear par DoG claro/oscuro",
        "Generar candidatos DoG revisables",
        "Vista de dislocaciones: fondo + realce lineal",
        "CLAHE en una copia",
        "Barrido de parametros",
        "Guardar vista actual y receta",
        "Buscar plugins recomendados"
    );
    Dialog.create("Herramientas de imagen TEM v5");
    Dialog.addMessage("Todas las operaciones se ejecutan sobre copias. Las vistas derivadas ayudan a visualizar y proponer candidatos, pero no sustituyen la comprobacion sobre el master u original.");
    Dialog.addChoice("Accion:", actions, actions[0]);
    Dialog.show();
    a=Dialog.getChoice();
    if(a==actions[0]) imageToolsCavityView();
    else if(a==actions[1]) imageToolsDogView(1);
    else if(a==actions[2]) imageToolsDogView(-1);
    else if(a==actions[3]) imageToolsDogPair();
    else if(a==actions[4]) imageToolsGenerateDogCandidates();
    else if(a==actions[5]) imageToolsDislocationView();
    else if(a==actions[6]) imageToolsClaheView();
    else if(a==actions[7]) imageToolsParameterSweep();
    else if(a==actions[8]) imageToolsSaveViewAndRecipe();
    else imageToolsPluginFinder();
}

function imageToolsCavityView() {
    if (!imageToolsRequireImage()) return;
    Dialog.create("Vista segura de cavidades");
    Dialog.addNumber("Radio de fondo - paraboloide deslizante (px):",80);
    Dialog.addNumber("Sigma gaussiano (px):",0.8);
    Dialog.addCheckbox("Aplicar unsharp mask moderado",1);
    Dialog.addNumber("Radio unsharp (px):",1.5);
    Dialog.addNumber("Peso unsharp:",0.5);
    Dialog.addCheckbox("Invertir LUT solo visualmente",0);
    Dialog.show();
    radius=Dialog.getNumber(); sigma=Dialog.getNumber(); doUnsharp=Dialog.getCheckbox(); unRadius=Dialog.getNumber(); unWeight=Dialog.getNumber(); invertLut=Dialog.getCheckbox();
    source=getTitle(); title=imageToolsUniqueTitle("VIEW_CAVITY");
    if (!imageToolsDuplicateFullImage(title)) return;
    if (radius>0 && !imageToolsSubtractBackgroundSafe(radius)) { close(); return; }
    if(sigma>0) run("Gaussian Blur...","sigma="+sigma);
    if(doUnsharp && unRadius>0) run("Unsharp Mask...","radius="+unRadius+" mask="+unWeight);
    if(invertLut) run("Invert LUT");
    imageToolsLastSource=source;
    imageToolsLastPurpose="cavity_visualization";
    imageToolsLastRecipe="{\"recipe_id\":\""+imageToolsTimestamp()+"\",\"purpose\":\"cavity_visualization\",\"source_title\":\""+jsonEscape(source)+"\",\"operations\":[{\"name\":\"sliding_paraboloid_background\",\"radius_px\":"+radius+"},{\"name\":\"gaussian_blur\",\"sigma_px\":"+sigma+"},{\"name\":\"unsharp_mask\",\"enabled\":"+doUnsharp+",\"radius_px\":"+unRadius+",\"weight\":"+unWeight+"},{\"name\":\"invert_lut\",\"enabled\":"+invertLut+"}],\"full_image_duplicate\":true,\"geometry_preserved\":true,\"measurement_role\":\"visualization_only\"}";
    showStatus("Vista de cavidades creada sobre una copia.");
}

function imageToolsDogView(polarity) {
    if (!imageToolsRequireImage()) return;
    Dialog.create("Difference of Gaussians");
    Dialog.addNumber("Sigma pequena (px):",1.0);
    Dialog.addNumber("Sigma grande (px):",2.5);
    Dialog.addCheckbox("Normalizar contraste de visualizacion",1);
    Dialog.show();
    s1=Dialog.getNumber(); s2=Dialog.getNumber(); enhance=Dialog.getCheckbox();
    if(s1<=0 || s2<=s1) { showMessage("Parametros no validos","Debe cumplirse 0 < sigma pequena < sigma grande."); return; }
    source=getTitle(); baseId=getImageID();
    title1=imageToolsUniqueTitle("DOG_SMALL"); if (!imageToolsDuplicateFullImage(title1)) return; run("32-bit"); run("Gaussian Blur...","sigma="+s1);
    selectImage(baseId); title2=imageToolsUniqueTitle("DOG_LARGE"); if (!imageToolsDuplicateFullImage(title2)) { selectWindow(title1); close(); selectImage(baseId); return; } run("32-bit"); run("Gaussian Blur...","sigma="+s2);
    if(polarity>0) result=imageCalculator("Subtract create 32-bit",title1,title2);
    else result=imageCalculator("Subtract create 32-bit",title2,title1);
    outputPrefix = "VIEW_DOG_DARK";
    if (polarity>0) outputPrefix = "VIEW_DOG_BRIGHT";
    selectImage(result); rename(imageToolsUniqueTitle(outputPrefix));
    if(enhance) run("Enhance Contrast","saturated=0.35");
    imageToolsLastSource=source;
    imageToolsLastPurpose="cavity_candidate_view";
    imageToolsLastRecipe="{\"recipe_id\":\""+imageToolsTimestamp()+"\",\"purpose\":\"cavity_candidate_view\",\"source_title\":\""+jsonEscape(source)+"\",\"operations\":[{\"name\":\"difference_of_gaussians\",\"sigma_small_px\":"+s1+",\"sigma_large_px\":"+s2+",\"polarity\":"+polarity+"}],\"full_image_duplicate\":true,\"geometry_preserved\":true,\"measurement_role\":\"candidate_detection_only\"}";
    showStatus("Vista DoG creada. Confirme siempre los candidatos sobre el master.");
}

function imageToolsDogPair() {
    if (!imageToolsRequireImage()) return;
    original=getImageID(); imageToolsDogView(1); selectImage(original); imageToolsDogView(-1);
}


function imageToolsGenerateDogCandidates() {
    if (!imageToolsRequireImage()) return;
    if (!v4EnsureProject()) return;
    if (!v4RequireCurrentRevisionBinding("generar candidatos", 1)) return;
    Dialog.create("Candidatos de cavidad por DoG");
    Dialog.addMessage("Se crea una vista DoG y una cola de candidatos no incluida en estadistica. Cada candidato debe confirmarse con 'Cavity V9: revisar objeto seleccionado'.");
    Dialog.addNumber("Sigma pequena (px):",1.0);
    Dialog.addNumber("Sigma grande (px):",2.5);
    Dialog.addChoice("Polaridad:",newArray("Cavidad clara","Cavidad oscura"),"Cavidad clara");
    Dialog.addNumber("Prominence de Find Maxima:",10.0);
    Dialog.addNumber("Diametro inicial (nm; 0 usa px):",5.0);
    Dialog.addNumber("Diametro inicial alternativo (px):",8.0);
    Dialog.addCheckbox("Excluir maximos en el borde",1);
    Dialog.show();
    s1=Dialog.getNumber(); s2=Dialog.getNumber(); polarityLabel=Dialog.getChoice(); prominence=Dialog.getNumber(); diameterNm=Dialog.getNumber(); diameterPxFallback=Dialog.getNumber(); excludeEdge=Dialog.getCheckbox();
    if(s1<=0 || s2<=s1 || prominence<0) { showMessage("Parametros no validos","Debe cumplirse 0 < sigma pequena < sigma grande y prominence >= 0."); return; }
    diameterPx=diameterPxFallback;
    if(diameterNm>0 && v4PixelWidth>0) diameterPx=diameterNm/v4PixelWidth;
    if(diameterPx<1) diameterPx=1;
    sourceId=getImageID(); sourceTitle=getTitle();
    smallTitle=imageToolsUniqueTitle("DOG_CAND_SMALL"); if (!imageToolsDuplicateFullImage(smallTitle)) return; run("32-bit"); run("Gaussian Blur...","sigma="+s1); smallId=getImageID();
    selectImage(sourceId); largeTitle=imageToolsUniqueTitle("DOG_CAND_LARGE"); if (!imageToolsDuplicateFullImage(largeTitle)) { selectImage(smallId); close(); selectImage(sourceId); return; } run("32-bit"); run("Gaussian Blur...","sigma="+s2); largeId=getImageID();
    polarity=1; if(polarityLabel=="Cavidad oscura") polarity=-1;
    if(polarity>0) resultId=imageCalculator("Subtract create 32-bit",smallTitle,largeTitle);
    else resultId=imageCalculator("Subtract create 32-bit",largeTitle,smallTitle);
    selectImage(resultId); rename(imageToolsUniqueTitle("VIEW_DOG_CANDIDATES"));
    resultId=getImageID();
    selectImage(smallId); close(); selectImage(largeId); close(); selectImage(resultId);
    options="prominence="+prominence+" output=[Point Selection]"; if(excludeEdge) options=options+" exclude";
    run("Find Maxima...",options);
    if(selectionType<0) { showMessage("Sin candidatos","Find Maxima no genero una seleccion. Reduzca prominence o revise la polaridad."); return; }
    getSelectionCoordinates(xs,ys);
    if(xs.length==0) { showMessage("Sin candidatos","No se encontraron maximos con estos parametros."); return; }
    previousSet=v4ActiveRoiSetId;
    if(!v4ReadRoiSet("CAVITY_CANDIDATES")) { showMessage("Conjunto ausente","No existe CAVITY_CANDIDATES en el registro ROI."); return; }
    run("ROI Manager..."); created=0;
    for(i=0;i<xs.length;i++) {
        makeOval(xs[i]-diameterPx/2,ys[i]-diameterPx/2,diameterPx,diameterPx);
        temporary="__V4_CANDIDATE_PENDING__"+d2s(getTime(),0)+"_"+i;
        Roi.setName(temporary); roiManager("add"); idx=roiManager("count")-1; safeRoiSelect(idx);
        id=v4NextObjectId(v4ActiveIdPrefix); safeRoiSelect(idx); now=d2s(getTime(),0); uuid=v4Uuid();
        Roi.setName(id); v4SetCoreProperties(id,uuid,now); v4SetGeometryProperties();
        Roi.setProperty("Object_class","doubtful");
        Roi.setProperty("Confidence","algorithmic");
        Roi.setProperty("Review_status","pending");
        Roi.setProperty("Include_in_statistics","0");
        Roi.setProperty("Count_valid","0");
        Roi.setProperty("Size_valid","0");
        Roi.setProperty("Position_valid","1");
        Roi.setProperty("Candidate_method","DoG_Find_Maxima");
        Roi.setProperty("Candidate_source_title",sourceTitle);
        Roi.setProperty("Candidate_sigma_small_px",""+s1);
        Roi.setProperty("Candidate_sigma_large_px",""+s2);
        Roi.setProperty("Candidate_prominence",""+prominence);
        Roi.setProperty("Candidate_polarity",""+polarity);
        v4ApplyActiveStyle(); roiManager("update"); v4RefreshSpatialProperties(idx); created++;
    }
    v4ReadRoiSet(previousSet);
    imageToolsLastSource=sourceTitle; imageToolsLastPurpose="cavity_candidate_detection";
    imageToolsLastRecipe="{\"recipe_id\":\""+imageToolsTimestamp()+"\",\"purpose\":\"cavity_candidate_detection\",\"source_title\":\""+jsonEscape(sourceTitle)+"\",\"operations\":[{\"name\":\"difference_of_gaussians\",\"sigma_small_px\":"+s1+",\"sigma_large_px\":"+s2+",\"polarity\":"+polarity+"},{\"name\":\"find_maxima\",\"prominence\":"+prominence+",\"exclude_edge\":"+excludeEdge+"}],\"initial_diameter_px\":"+diameterPx+",\"candidate_count\":"+created+",\"full_image_duplicate\":true,\"geometry_preserved\":true,\"measurement_role\":\"candidate_detection_only\"}";
    showAllRois();
    showMessage("Candidatos creados","Candidatos: "+created+"\nConjunto: CAVITY_CANDIDATES\n\nNo se incluyen en estadistica hasta confirmarlos individualmente.");
}

function imageToolsDislocationView() {
    if (!imageToolsRequireImage()) return;
    Dialog.create("Vista segura de dislocaciones");
    Dialog.addNumber("Radio de fondo - paraboloide deslizante (px):",120);
    Dialog.addNumber("Sigma gaussiano (px):",0.7);
    Dialog.addChoice("Realce:",newArray("Unsharp moderado","Find Edges","Sin realce adicional"),"Unsharp moderado");
    Dialog.addNumber("Radio unsharp (px):",2.0);
    Dialog.addNumber("Peso unsharp:",0.6);
    Dialog.show();
    radius=Dialog.getNumber(); sigma=Dialog.getNumber(); method=Dialog.getChoice(); unRadius=Dialog.getNumber(); unWeight=Dialog.getNumber();
    source=getTitle(); title=imageToolsUniqueTitle("VIEW_DISLOCATION"); if (!imageToolsDuplicateFullImage(title)) return;
    if (radius>0 && !imageToolsSubtractBackgroundSafe(radius)) { close(); return; }
    if(sigma>0) run("Gaussian Blur...","sigma="+sigma);
    if(method=="Unsharp moderado") run("Unsharp Mask...","radius="+unRadius+" mask="+unWeight);
    if(method=="Find Edges") run("Find Edges");
    imageToolsLastSource=source;
    imageToolsLastPurpose="dislocation_visualization";
    imageToolsLastRecipe="{\"recipe_id\":\""+imageToolsTimestamp()+"\",\"purpose\":\"dislocation_visualization\",\"source_title\":\""+jsonEscape(source)+"\",\"operations\":[{\"name\":\"sliding_paraboloid_background\",\"radius_px\":"+radius+"},{\"name\":\"gaussian_blur\",\"sigma_px\":"+sigma+"},{\"name\":\"line_enhancement\",\"method\":\""+jsonEscape(method)+"\",\"radius_px\":"+unRadius+",\"weight\":"+unWeight+"}],\"full_image_duplicate\":true,\"geometry_preserved\":true,\"measurement_role\":\"visualization_only\"}";
    showStatus("Vista de dislocaciones creada sobre una copia.");
}

function imageToolsClaheView() {
    if (!imageToolsRequireImage()) return;
    Dialog.create("CLAHE sobre copia");
    Dialog.addNumber("Block size (px):",127);
    Dialog.addNumber("Histogram bins:",256);
    Dialog.addNumber("Max slope:",2.0);
    Dialog.addCheckbox("Fast mode",0);
    Dialog.show();
    block=Dialog.getNumber(); bins=Dialog.getNumber(); slope=Dialog.getNumber(); fast=Dialog.getCheckbox();
    source=getTitle(); title=imageToolsUniqueTitle("VIEW_CLAHE"); if (!imageToolsDuplicateFullImage(title)) return;
    options="blocksize="+block+" histogram="+bins+" maximum="+slope+" mask=*None*";
    if(fast) options=options+" fast_(less_accurate)";
    run("Enhance Local Contrast (CLAHE)",options);
    imageToolsLastSource=source;
    imageToolsLastPurpose="local_contrast_visualization";
    imageToolsLastRecipe="{\"recipe_id\":\""+imageToolsTimestamp()+"\",\"purpose\":\"local_contrast_visualization\",\"source_title\":\""+jsonEscape(source)+"\",\"operations\":[{\"name\":\"clahe\",\"block_size_px\":"+block+",\"histogram_bins\":"+bins+",\"max_slope\":"+slope+",\"fast\":"+fast+"}],\"full_image_duplicate\":true,\"geometry_preserved\":true,\"measurement_role\":\"visualization_only\"}";
}

function imageToolsParameterSweep() {
    if (!imageToolsRequireImage()) return;
    Dialog.create("Barrido de parametros");
    Dialog.addChoice("Operacion:",newArray("Gaussian Blur","Fondo - paraboloide deslizante","Unsharp Mask","DoG sigma grande"),"Gaussian Blur");
    Dialog.addString("Valores separados por ;:","0.5;0.8;1.0;1.5");
    Dialog.addNumber("Parametro fijo auxiliar:",1.0);
    Dialog.show();
    op=Dialog.getChoice(); raw=Dialog.getString(); fixed=Dialog.getNumber(); values=split(raw,";"); original=getImageID(); source=getTitle();
    for(i=0;i<values.length;i++) {
        v=parseFloat(String.trim(values[i])); if(isNaN(v)||v<=0) continue;
        selectImage(original);
        if(op=="Gaussian Blur") { title=imageToolsUniqueTitle("SWEEP_GAUSS_"+v); if (!imageToolsDuplicateFullImage(title)) continue; run("Gaussian Blur...","sigma="+v); }
        else if(op=="Fondo - paraboloide deslizante") { title=imageToolsUniqueTitle("SWEEP_BG_"+v); if (!imageToolsDuplicateFullImage(title)) continue; if (!imageToolsSubtractBackgroundSafe(v)) { close(); continue; } }
        else if(op=="Unsharp Mask") { title=imageToolsUniqueTitle("SWEEP_UNSHARP_"+v); if (!imageToolsDuplicateFullImage(title)) continue; run("Unsharp Mask...","radius="+v+" mask="+fixed); }
        else { title1=imageToolsUniqueTitle("SWEEP_DOG_S"); if (!imageToolsDuplicateFullImage(title1)) continue; run("32-bit"); run("Gaussian Blur...","sigma="+fixed); selectImage(original); title2=imageToolsUniqueTitle("SWEEP_DOG_L"); if (!imageToolsDuplicateFullImage(title2)) { selectWindow(title1); close(); continue; } run("32-bit"); run("Gaussian Blur...","sigma="+v); result=imageCalculator("Subtract create 32-bit",title1,title2); selectImage(result); rename(imageToolsUniqueTitle("SWEEP_DOG_"+v)); }
    }
    imageToolsLastSource=source;
    imageToolsLastPurpose="parameter_sweep";
    imageToolsLastRecipe="{\"recipe_id\":\""+imageToolsTimestamp()+"\",\"purpose\":\"parameter_sweep\",\"source_title\":\""+jsonEscape(source)+"\",\"operation\":\""+jsonEscape(op)+"\",\"values\":\""+jsonEscape(raw)+"\",\"auxiliary\":"+fixed+",\"measurement_role\":\"visualization_only\"}";
    showStatus("Barrido creado. Compare las copias y conserve los parametros elegidos.");
}

function imageToolsSaveViewAndRecipe() {
    if (!imageToolsRequireImage()) return;
    imageProjectRoot = v4FindProjectRootFromCurrentImage();
    loadedProjectRoot = "";
    if (v4ProjectLoaded && v4ProjectDir != "") loadedProjectRoot = v4ProjectDir;
    if (!v55RequireProjectRootMatch(imageProjectRoot, loadedProjectRoot, "guardar la vista derivada", 1)) return;
    projectOutputRoot = imageProjectRoot;
    if (projectOutputRoot == "") projectOutputRoot = loadedProjectRoot;
    projectOutput = projectOutputRoot != "";
    if (projectOutput && !v55ProjectBridgeMarkerClear(projectOutputRoot, "guardar la vista derivada", 1)) return;
    if (imageToolsLastRecipe=="") imageToolsLastRecipe="{\"recipe_id\":\""+imageToolsTimestamp()+"\",\"purpose\":\"manual_visualization\",\"source_title\":\""+jsonEscape(imageToolsLastSource)+"\",\"operations\":[],\"full_image_duplicate\":true,\"geometry_preserved\":true,\"measurement_role\":\"visualization_only\"}";
    defaultDir=getDirectory("image");
    if(projectOutput) defaultDir=projectAwareJoinPath(projectOutputRoot,"analysis_images/general_views");
    Dialog.create("Guardar vista derivada");
    Dialog.addString("Nombre base:",imageToolsSanitize(getTitle()));
    Dialog.addChoice("Rol:",newArray("VISUALIZATION_ONLY","CANDIDATE_DETECTION_ONLY","PROCESSED_ANALYSIS_IMAGE"),"VISUALIZATION_ONLY");
    Dialog.show();
    base=imageToolsSanitize(Dialog.getString()); role=Dialog.getChoice();
    if (base=="" || base=="." || base=="..") { showMessage("Nombre no valido","Use un nombre de fichero simple, sin rutas relativas."); return; }
    if (projectOutput && !v55ProjectBridgeMarkerClear(projectOutputRoot, "guardar la vista derivada", 1)) return;
    if (projectOutput) makeDirIfMissing(defaultDir);
    if(defaultDir=="") defaultDir=getDirectory("home");
    tifPath=projectAwareJoinPath(defaultDir,base+".tif"); jsonPath=projectAwareJoinPath(defaultDir,base+".recipe.json");
    if (!imageToolsPathInsideDirectory(tifPath,defaultDir) || !imageToolsPathInsideDirectory(jsonPath,defaultDir)) { showMessage("Ruta no valida","La vista y su receta deben permanecer dentro del directorio seleccionado."); return; }
    if (projectOutput && !v55ProjectBridgeMarkerClear(projectOutputRoot, "guardar la vista derivada", 1)) return;
    saveAs("Tiff",tifPath);
    if (projectOutput && !v55ProjectBridgeMarkerClear(projectOutputRoot, "guardar la receta derivada", 1)) return;
    recipe=imageToolsLastRecipe;
    if(endsWith(recipe,"}")) recipe=substring(recipe,0,lengthOf(recipe)-1)+",\"saved_image\":\""+jsonEscape(tifPath)+"\",\"declared_role\":\""+role+"\",\"tool_version\":\""+imageToolsVersion+"\"}";
    File.saveString(recipe+"\n",jsonPath);
    if (projectOutput && !v55ProjectBridgeMarkerClear(projectOutputRoot, "terminar de guardar la vista derivada", 1)) return;
    showMessage("Vista guardada",tifPath+"\n\nReceta:\n"+jsonPath);
}

function imageToolsPathInsideDirectory(pathText, directoryText) {
    candidate = normalizeStoredPath(v55CanonicalPathJava(pathText));
    boundary = normalizeStoredPath(v55CanonicalPathJava(directoryText));
    if (candidate=="" || boundary=="") return 0;
    if (!endsWith(boundary,"/")) boundary=boundary+"/";
    return startsWith(toLowerCase(candidate),toLowerCase(boundary));
}

function imageToolsPluginFinder() {
    choices=newArray("Tubeness","Ridge Detection","Directionality","Labkit","Trainable Weka Segmentation","Non Local Means Denoise","MorphoLibJ");
    Dialog.create("Plugins recomendados");
    Dialog.addChoice("Buscar:",choices,choices[0]);
    Dialog.addMessage("Se abrira Command Finder. La disponibilidad depende de los update sites instalados en Fiji.");
    Dialog.show();
    query=Dialog.getChoice();
    run("Command Finder...","search=["+query+"]");
}

function imageToolsRequireImage() {
    if(nImages()<=0) { showMessage("Sin imagen","Abra una imagen TEM antes de continuar."); return 0; }
    return 1;
}


function imageToolsDuplicateFullImage(title) {
    // The ImageJ "Duplicate..." command crops to the active ROI. This wrapper
    // duplicates the complete image or stack, preserves the ROI on the source
    // and removes it from the working copy so filters always process all pixels.
    return projectAwareDuplicateFullImage(title);
}

function imageToolsSubtractBackgroundSafe(radius) {
    if (radius <= 0) return 1;
    getDimensions(bgWidth, bgHeight, bgChannels, bgSlices, bgFrames);
    if (bgWidth < 3 || bgHeight < 3) {
        showMessage("Imagen demasiado pequena",
            "La correccion de fondo necesita al menos 3 x 3 pixeles.\n\n" +
            "La copia activa mide " + bgWidth + " x " + bgHeight + " px.\n" +
            "Esto suele indicar que una ROI fue recortada accidentalmente.");
        return 0;
    }
    // Use the sliding paraboloid, not the legacy rolling-ball implementation.
    // It avoids the downsample/enlarge path that fails for one-pixel dimensions.
    run("Subtract Background...", "rolling=" + radius + " sliding");
    return 1;
}

function imageToolsUniqueTitle(prefix) {
    base=prefix+"__"+imageToolsTimestamp();
    return base;
}

function imageToolsTimestamp() {
    getDateAndTime(year,month,dayOfWeek,dayOfMonth,hour,minute,second,msec);
    return year+IJ.pad(month+1,2)+IJ.pad(dayOfMonth,2)+"_"+IJ.pad(hour,2)+IJ.pad(minute,2)+IJ.pad(second,2)+"_"+msec;
}

function imageToolsSanitize(s) {
    s=replace(s," ","_"); s=replace(s,"/","_"); s=replace(s,"\\","_"); s=replace(s,":","_"); s=replace(s,"*","_"); s=replace(s,"?","_"); s=replace(s,"\"","_"); s=replace(s,"<","_"); s=replace(s,">","_"); s=replace(s,"|","_");
    return s;
}


// -----------------------------------------------------------------------------
// Prompt-1 Fiji facade (R10-P0 closed contract)
// -----------------------------------------------------------------------------

function p1ImageProperty(key) {
    if (nImages() <= 0) return "";
    code = "var imp=Packages.ij.WindowManager.getCurrentImage(),v=imp==null?null:imp.getProperty('" + jsEscape(key) + "');v==null?'':String(v);";
    return "" + eval("js", code);
}


var p1EmbeddedRuntimeSourceSha256 = "c3ae8f63744a6532cb8b291d47acb2d1dac3fb0cd06f7bcc0c8827b0c67f8fa5";
var p1EmbeddedRuntimeSourceBytes = 188933;

function p1EmbeddedRuntimeBase64() {
    encoded = "";
    encoded = encoded + "LyoKICogQ2F2aXR5IFRFTSBMaWdodCBQcm9tcHQtMSBGaWppIHJ1bnRpbWUuCiAqCiAqIFJlYWRhYmxlIHNvdXJjZSBmb3IgdGhlIGJ5dGUtaWRlbnRpY2FsIGJsb2NrIGVtYmVkZGVkIGluCiAqIENhdml0eV9URU1fTGlnaHRfdjFfMl8wX1IxMF9ERVYwMS5pam0uICBUaGlzIGlzIGFuIGVuZ2luZWVyaW5nLXByZXZp";
    encoded = encoded + "ZXcKICogcnVudGltZSwgbm90IGEgc2NpZW50aWZpYy12YWxpZGF0aW9uIGNsYWltLgogKgogKiBDb21wYXRpYmlsaXR5OiBFUzUgc3ludGF4IGZvciB0aGUgSmF2YVNjcmlwdCBlbmdpbmVzIHNoaXBwZWQgYnkgc3VwcG9ydGVkCiAqIEZpamkvSW1hZ2VKIGluc3RhbGxhdGlvbnMuICBUaGVyZSBpcyBkZWxpYmVyYXRl";
    encoded = encoded + "bHkgbm8gc2hlbGwgaW52b2NhdGlvbiBhbmQKICogbm8gUHl0aG9uL3J1bnRpbWUgZGlzY292ZXJ5IGluIHRoaXMgZmlsZS4KICovCihmdW5jdGlvbiAoKSB7CiAgICAidXNlIHN0cmljdCI7CgogICAgdmFyIElKID0gUGFja2FnZXMuaWouSUo7CiAgICB2YXIgV00gPSBQYWNrYWdlcy5pai5XaW5kb3dNYW5hZ2VyOwog";
    encoded = encoded + "ICAgdmFyIEltYWdlUGx1cyA9IFBhY2thZ2VzLmlqLkltYWdlUGx1czsKICAgIHZhciBJbWFnZUxpc3RlbmVyID0gUGFja2FnZXMuaWouSW1hZ2VMaXN0ZW5lcjsKICAgIHZhciBSb2lNYW5hZ2VyID0gUGFja2FnZXMuaWoucGx1Z2luLmZyYW1lLlJvaU1hbmFnZXI7CiAgICB2YXIgRXhlY3V0ZXIgPSBQYWNrYWdlcy5p";
    encoded = encoded + "ai5FeGVjdXRlcjsKICAgIHZhciBPdmFsUm9pID0gUGFja2FnZXMuaWouZ3VpLk92YWxSb2k7CiAgICB2YXIgS2V5RXZlbnQgPSBQYWNrYWdlcy5qYXZhLmF3dC5ldmVudC5LZXlFdmVudDsKICAgIHZhciBXaW5kb3dFdmVudCA9IFBhY2thZ2VzLmphdmEuYXd0LmV2ZW50LldpbmRvd0V2ZW50OwogICAgdmFyIEtleUFk";
    encoded = encoded + "YXB0ZXIgPSBQYWNrYWdlcy5qYXZhLmF3dC5ldmVudC5LZXlBZGFwdGVyOwogICAgdmFyIE1vdXNlQWRhcHRlciA9IFBhY2thZ2VzLmphdmEuYXd0LmV2ZW50Lk1vdXNlQWRhcHRlcjsKICAgIHZhciBNb3VzZVdoZWVsTGlzdGVuZXIgPSBQYWNrYWdlcy5qYXZhLmF3dC5ldmVudC5Nb3VzZVdoZWVsTGlzdGVuZXI7CiAg";
    encoded = encoded + "ICB2YXIgQWN0aW9uTGlzdGVuZXIgPSBQYWNrYWdlcy5qYXZhLmF3dC5ldmVudC5BY3Rpb25MaXN0ZW5lcjsKICAgIHZhciBTd2luZ1V0aWxpdGllcyA9IFBhY2thZ2VzLmphdmF4LnN3aW5nLlN3aW5nVXRpbGl0aWVzOwogICAgdmFyIFRpbWVyID0gUGFja2FnZXMuamF2YXguc3dpbmcuVGltZXI7CiAgICB2YXIgRXhl";
    encoded = encoded + "Y3V0b3JzID0gUGFja2FnZXMuamF2YS51dGlsLmNvbmN1cnJlbnQuRXhlY3V0b3JzOwogICAgdmFyIENvdW50RG93bkxhdGNoID0gUGFja2FnZXMuamF2YS51dGlsLmNvbmN1cnJlbnQuQ291bnREb3duTGF0Y2g7CiAgICB2YXIgVGhyZWFkRmFjdG9yeSA9IFBhY2thZ2VzLmphdmEudXRpbC5jb25jdXJyZW50LlRocmVh";
    encoded = encoded + "ZEZhY3Rvcnk7CiAgICB2YXIgVGltZVVuaXQgPSBQYWNrYWdlcy5qYXZhLnV0aWwuY29uY3VycmVudC5UaW1lVW5pdDsKICAgIHZhciBSZWVudHJhbnRMb2NrID0gUGFja2FnZXMuamF2YS51dGlsLmNvbmN1cnJlbnQubG9ja3MuUmVlbnRyYW50TG9jazsKICAgIHZhciBSdW5uYWJsZSA9IFBhY2thZ2VzLmphdmEubGFu";
    encoded = encoded + "Zy5SdW5uYWJsZTsKICAgIHZhciBTeXN0ZW0gPSBQYWNrYWdlcy5qYXZhLmxhbmcuU3lzdGVtOwogICAgdmFyIExvbmdDbGFzcyA9IFBhY2thZ2VzLmphdmEubGFuZy5Mb25nOwogICAgdmFyIE1lc3NhZ2VEaWdlc3QgPSBQYWNrYWdlcy5qYXZhLnNlY3VyaXR5Lk1lc3NhZ2VEaWdlc3Q7CiAgICB2YXIgRmlsZUlucHV0";
    encoded = encoded + "U3RyZWFtID0gUGFja2FnZXMuamF2YS5pby5GaWxlSW5wdXRTdHJlYW07CiAgICB2YXIgQnVmZmVyZWRJbnB1dFN0cmVhbSA9IFBhY2thZ2VzLmphdmEuaW8uQnVmZmVyZWRJbnB1dFN0cmVhbTsKICAgIHZhciBGaWxlID0gUGFja2FnZXMuamF2YS5pby5GaWxlOwogICAgdmFyIEJ5dGVBcnJheUlucHV0U3RyZWFtID0g";
    encoded = encoded + "UGFja2FnZXMuamF2YS5pby5CeXRlQXJyYXlJbnB1dFN0cmVhbTsKICAgIHZhciBCeXRlQXJyYXlPdXRwdXRTdHJlYW0gPSBQYWNrYWdlcy5qYXZhLmlvLkJ5dGVBcnJheU91dHB1dFN0cmVhbTsKICAgIHZhciBaaXBJbnB1dFN0cmVhbSA9IFBhY2thZ2VzLmphdmEudXRpbC56aXAuWmlwSW5wdXRTdHJlYW07CiAgICB2";
    encoded = encoded + "YXIgWmlwT3V0cHV0U3RyZWFtID0gUGFja2FnZXMuamF2YS51dGlsLnppcC5aaXBPdXRwdXRTdHJlYW07CiAgICB2YXIgWmlwRW50cnkgPSBQYWNrYWdlcy5qYXZhLnV0aWwuemlwLlppcEVudHJ5OwogICAgdmFyIFJvaURlY29kZXIgPSBQYWNrYWdlcy5pai5pby5Sb2lEZWNvZGVyOwogICAgdmFyIFJvaUVuY29kZXIg";
    encoded = encoded + "PSBQYWNrYWdlcy5pai5pby5Sb2lFbmNvZGVyOwogICAgdmFyIEJhc2U2NCA9IFBhY2thZ2VzLmphdmEudXRpbC5CYXNlNjQ7CiAgICB2YXIgU3RhbmRhcmRDaGFyc2V0cyA9IFBhY2thZ2VzLmphdmEubmlvLmNoYXJzZXQuU3RhbmRhcmRDaGFyc2V0czsKICAgIHZhciBGaWxlcyA9IFBhY2thZ2VzLmphdmEubmlvLmZp";
    encoded = encoded + "bGUuRmlsZXM7CiAgICB2YXIgVVVJRCA9IFBhY2thZ2VzLmphdmEudXRpbC5VVUlEOwoKICAgIHZhciBWRVJTSU9OID0gIkNUTF9QMV9GSUpJX1JVTlRJTUVfVjEiOwogICAgLy8gVGhpcyBpZGVudGl0eSBpcyBpbnRlbnRpb25hbGx5IGluZGVwZW5kZW50IG9mIHRoZSBzb3VyY2UgZGlnZXN0LiAgVGhlCiAgICAvLyBj";
    encoded = encoded + "YW5kaWRhdGUgdmVyaWZpZXMgdGhlIGVtYmVkZGVkIHNvdXJjZSBkaWdlc3QgYmVmb3JlIGV2YWx1YXRpbmcgaXQsIGFuZAogICAgLy8gdGhpcyBub24tc2VsZi1yZWZlcmVudGlhbCB0b2tlbiBwcmV2ZW50cyBhIHByaW9yIHNhbWUtdmVyc2lvbiBydW50aW1lCiAgICAvLyBvYmplY3QgZnJvbSBiZWluZyBzaWxlbnRs";
    encoded = encoded + "eSByZXVzZWQgaW4gYSBsb25nLWxpdmVkIEZpamkgcHJvY2Vzcy4KICAgIHZhciBCVUlMRF9JREVOVElUWSA9ICJDVExfUDFfRklKSV9SVU5USU1FX0JVSUxEXzIwMjYwODIxXzExIjsKICAgIHZhciBURUxFTUVUUllfU0NIRU1BID0gIkNUTF9QMV9SVU5USU1FX1RFTEVNRVRSWV9WMSI7CiAgICB2YXIgVEVMRU1FVFJZ";
    encoded = encoded + "X0NBUEFDSVRZID0gNDA5NjsKICAgIHZhciBQSVhFTF9IQVNIX01FVEhPRCA9ICJDVExfTUFTVEVSX1BJWEVMX1NIQTI1Nl9WMSI7CiAgICB2YXIgUlVOVElNRV9LRVkgPSAiQ1RMLlAxLlJ1bnRpbWUiOwogICAgdmFyIFNUQVRFX0tFWSA9ICJDVEwuUDEuUnVudGltZVN0YXRlIjsKICAgIHZhciBTV0lUQ0hfS0VZID0g";
    encoded = encoded + "IkNUTC5QMS5QZW5kaW5nSW1hZ2VTd2l0Y2giOwogICAgdmFyIEFDVElWRV9SRVFVRVNUX0tFWSA9ICJDVEwuUDEuQWN0aXZlUmVxdWVzdElkIjsKICAgIHZhciBBQ1RJVkVfVFJBTlNBQ1RJT05fS0VZID0gIkNUTC5QMS5BY3RpdmVUcmFuc2FjdGlvbklkIjsKICAgIC8vIFJlc3RyaWN0ZWQgaW4tbWVtb3J5IGNhbXBh";
    encoded = encoded + "aWduIHNlYW0uICBQcm9kdWN0aW9uIGNvZGUgbmV2ZXIgaW5zdGFsbHMKICAgIC8vIHRoaXMgcHJvcGVydHksIHNvIHRoZSBub3JtYWwgcGF0aCBwZXJmb3JtcyBubyB3YWl0IGFuZCBubyBVSSBhY3Rpb24uCiAgICAvLyBUaGUgRmlqaS1yZWFsIGhhcm5lc3MgaW5zdGFsbHMgb25lIGNhbm9uaWNhbCwgZGF0YS1vbmx5";
    encoded = encoded + "IG1hcmtlciBiZWZvcmUKICAgIC8vIGl0cyByZWFsIEN0cmwrU2hpZnQrRSBLZXlFdmVudDsgdGhlIHJ1bnRpbWUgY29uc3VtZXMgaXQgYWZ0ZXIgUFJFUEFSRQogICAgLy8gYW5kIHBlcmZvcm1zIHRoZSBleGFjdCBBLXRvLUIgYWN0aXZhdGlvbiBpdHNlbGYuICBDYWxsZXIgY29kZSBpcyBuZXZlcgogICAgLy8gZXhl";
    encoded = encoded + "Y3V0ZWQgZnJvbSB0aGUgc2NpZW50aWZpYyB3b3JrZXIuCiAgICB2YXIgRVZUMDA2X0JBUlJJRVJfTUFSS0VSX0tFWSA9ICJDVEwuUDEuSGFybmVzcy5FVlQwMDZQcmVwYXJlU3dpdGNoQmFycmllclYyIjsKICAgIHZhciBFVlQwMDZfQkFSUklFUl9TVEFUVVNfS0VZID0gIkNUTC5QMS5IYXJuZXNzLkVWVDAwNkRyaXZl";
    encoded = encoded + "clN0YXR1cyI7CiAgICB2YXIgRVZUMDA2X0JBUlJJRVJfU0NIRU1BID0gIkNUTF9QMV9IQVJORVNTX0VWVDAwNl9QUkVQQVJFX1NXSVRDSF9CQVJSSUVSX1YyIjsKICAgIHZhciBFVlQwMDZfQkFSUklFUl9USU1FT1VUX01TID0gMjAwMDsKICAgIHZhciBJREVOVElUWV9OQU1FU1BBQ0VfVVVJRCA9ICIwN2ViMGEwNi01";
    encoded = encoded + "M2NiLTViZTQtOGY2MS03YjUyMDM4ZDQ3MDYiOwogICAgdmFyIExFR0FDWV9SRUdJU1RSWV9SRUxBVElWRV9QQVRIID0gImltYWdlcy50c3YiOwogICAgdmFyIExFR0FDWV9SRUdJU1RSWV9IRUFERVIgPSAiaW1hZ2VfaWRcdGRpc3BsYXlfbmFtZVx0c291cmNlX3BhdGhcdHN0b3JlZF9wYXRoXHRzaGEyNTZcdHNhbXBs";
    encoded = encoded + "ZV9uYW1lXHRjb25kaXRpb25cdG1vZGVcdHRoaWNrbmVzc19ubVx0c2NhbGVfeF9ubV9weFx0c2NhbGVfeV9ubV9weFx0Y3VycmVudF9yZXZpc2lvblx0Y3VycmVudF9ydW5cdHVwZGF0ZWRfbXMiOwogICAgdmFyIFJFUVVJUkVEX0NPTlRFWFRfS0VZUyA9IFsKICAgICAgICAicHJvamVjdF9pZCIsICJwcm9qZWN0X3Vp";
    encoded = encoded + "ZCIsICJpbWFnZV9pZCIsICJpbWFnZV91aWQiLCAic291cmNlX3NoYTI1NiIsCiAgICAgICAgIm1hc3Rlcl9waXhlbF9zaGEyNTYiLCAiYW5hbHlzaXNfc2Vzc2lvbl9pZCIsCiAgICAgICAgImFuYWx5c2lzX3Nlc3Npb25fdWlkIiwgInN0YXRlX2lkZW50aXR5IiwgImltYWdlcGx1c19pZGVudGl0eSIsCiAgICAgICAg";
    encoded = encoded + "IndpbmRvd19pZGVudGl0eSIsICJvYmplY3RfdXVpZCIsICJjYXZpdHlfaWQiLAogICAgICAgICJzZWxlY3Rpb25fcmV2aXNpb24iLCAiZ2VuZXJhdGlvbl90b2tlbiIsICJjb21tYW5kX2lkIgogICAgXTsKICAgIHZhciBURUxFTUVUUllfRVZFTlRfVFlQRVMgPSB7CiAgICAgICAgTUFTVEVSX1ZFUklGWTogdHJ1ZSwg";
    encoded = encoded + "Q09NTUFORF9CTE9DS0VEOiB0cnVlLCBERUZFUlJFRF9TQ0hFRFVMRUQ6IHRydWUsCiAgICAgICAgREVGRVJSRURfQ0FMTEJBQ0s6IHRydWUsIExJU1RFTkVSX0lOU1RBTExFRDogdHJ1ZSwgTElTVEVORVJfVU5JTlNUQUxMRUQ6IHRydWUsCiAgICAgICAgQ0FMTEJBQ0tfRElTUEFUQ0g6IHRydWUsIENPTU1BTkRfRU5R";
    encoded = encoded + "VUVVRUQ6IHRydWUsIENPTU1BTkRfU1RBUlRFRDogdHJ1ZSwKICAgICAgICBCUklER0VfUkVRVUVTVEVEOiB0cnVlLCBUUkFOU0FDVElPTl9QSEFTRTogdHJ1ZSwgUFVCTElDQVRJT05fQVRURU1QVDogdHJ1ZSwKICAgICAgICBXUklURV9BVFRFTVBUOiB0cnVlLCBCUklER0VfQ09NUExFVEVEOiB0cnVlLCBDT01NQU5E";
    encoded = encoded + "X0ZJTklTSEVEOiB0cnVlLAogICAgICAgIElNQUdFX1NXSVRDSF9SRVFVRVNURUQ6IHRydWUsIElNQUdFX1NXSVRDSF9DQU5DRUxMRUQ6IHRydWUKICAgIH07CiAgICB2YXIgVEVMRU1FVFJZX09QRVJBVElPTlMgPSB7CiAgICAgICAgVkVSSUZZX01BU1RFUjogdHJ1ZSwgRURJVF9ST0k6IHRydWUsIFNBVkVfUkVWSVNJ";
    encoded = encoded + "T046IHRydWUsIEVYUE9SVF9SVU46IHRydWUsCiAgICAgICAgU0VMRUNUX1BST0pFQ1RfSU1BR0U6IHRydWUsIExJU1RFTkVSX0xJRkVDWUNMRTogdHJ1ZSwgTk9ORTogdHJ1ZQogICAgfTsKICAgIHZhciBURUxFTUVUUllfUEhBU0VTID0gewogICAgICAgIENBUFRVUkVEOiB0cnVlLCBTQ0hFRFVMRUQ6IHRydWUsIERJ";
    encoded = encoded + "U1BBVENIRUQ6IHRydWUsIFBSRVBBUkU6IHRydWUsCiAgICAgICAgV1JJVEVfVEVNUDogdHJ1ZSwgVkFMSURBVEU6IHRydWUsIENPTU1JVDogdHJ1ZSwgUk9MTEJBQ0s6IHRydWUsCiAgICAgICAgQ0FOQ0VMOiB0cnVlLCBDT01QTEVURTogdHJ1ZSwgTk9ORTogdHJ1ZQogICAgfTsKICAgIHZhciBURUxFTUVUUllfU1RB";
    encoded = encoded + "VFVTRVMgPSB7CiAgICAgICAgTk9UX1ZFUklGSUVEOiB0cnVlLCBNSVNNQVRDSDogdHJ1ZSwgVkVSSUZJRUQ6IHRydWUsIEFDQ0VQVEVEOiB0cnVlLAogICAgICAgIFJFSkVDVEVEX1NUQUxFOiB0cnVlLCBSRUpFQ1RFRF9HRU5FUkFUSU9OOiB0cnVlLAogICAgICAgIEJMT0NLRURfTk9UX1ZFUklGSUVEOiB0cnVlLCBC";
    encoded = encoded + "TE9DS0VEX01JU01BVENIOiB0cnVlLCBTVEFSVEVEOiB0cnVlLAogICAgICAgIFNVQ0NFRURFRDogdHJ1ZSwgRkFJTEVEOiB0cnVlLCBDQU5DRUxMRUQ6IHRydWUsIFNFUklBTElaRUQ6IHRydWUsCiAgICAgICAgTk9fT1A6IHRydWUsIE5PTkU6IHRydWUKICAgIH07CiAgICB2YXIgVEVMRU1FVFJZX0NBTExCQUNLX0RF";
    encoded = encoded + "Q0lTSU9OUyA9IHsKICAgICAgICBBQ0NFUFRFRDogdHJ1ZSwgUkVKRUNURURfU1RBTEVfQ09OVEVYVDogdHJ1ZSwKICAgICAgICBSRUpFQ1RFRF9HRU5FUkFUSU9OOiB0cnVlLCBOT1RfQVBQTElDQUJMRTogdHJ1ZQogICAgfTsKICAgIHZhciBURUxFTUVUUllfUFVCTElDQVRJT05fVEFSR0VUUyA9IHsKICAgICAgICBS";
    encoded = encoded + "RVZJU0lPTjogdHJ1ZSwgUlVOOiB0cnVlLCBDVVJSRU5UX1JFVklTSU9OX1BPSU5URVI6IHRydWUsCiAgICAgICAgQ1VSUkVOVF9SVU5fUE9JTlRFUjogdHJ1ZSwgUlVOX1JFR0lTVFJZOiB0cnVlLCBOT05FOiB0cnVlCiAgICB9OwogICAgdmFyIFRFTEVNRVRSWV9SRVNVTFRTID0gewogICAgICAgIE5PVF9BVFRFTVBU";
    encoded = encoded + "RUQ6IHRydWUsIENPTU1JVFRFRDogdHJ1ZSwgQkxPQ0tFRDogdHJ1ZSwKICAgICAgICBST0xMRURfQkFDSzogdHJ1ZSwgRkFJTEVEOiB0cnVlCiAgICB9OwogICAgdmFyIFRFTEVNRVRSWV9XUklURV9UQVJHRVRTID0gewogICAgICAgIEFVRElUX0VWRU5UOiB0cnVlLCBQUk9KRUNUX1NDSUVOQ0U6IHRydWUsIFJFVklT";
    encoded = encoded + "SU9OX1NUQUdJTkc6IHRydWUsCiAgICAgICAgUlVOX1NUQUdJTkc6IHRydWUsIFBPSU5URVI6IHRydWUsIFJFR0lTVFJZOiB0cnVlLCBOT05FOiB0cnVlCiAgICB9OwogICAgdmFyIFRFTEVNRVRSWV9KT1VSTkFMX1NUQVRFUyA9IHsKICAgICAgICBOT1RfQVBQTElDQUJMRTogdHJ1ZSwgUFJFUEFSRUQ6IHRydWUsIENP";
    encoded = encoded + "TU1JVFRFRDogdHJ1ZSwKICAgICAgICBST0xMRURfQkFDSzogdHJ1ZSwgRkFJTEVEX1BBUlRJQUw6IHRydWUKICAgIH07CiAgICB2YXIgdGVsZW1ldHJ5U3RhdGUgPSBudWxsOwogICAgdmFyIHRlbGVtZXRyeVF1ZXVlRGVwdGggPSAwOwogICAgdmFyIHRlbGVtZXRyeVdyaXRlckFjdGl2ZUNvdW50ID0gMDsKICAgIHZh";
    encoded = encoded + "ciB0ZWxlbWV0cnlUcmFuc2FjdGlvbnMgPSB7fTsKICAgIHZhciB0ZWxlbWV0cnlMb2NrID0gbmV3IFJlZW50cmFudExvY2sodHJ1ZSk7CiAgICB2YXIgcnVudGltZVF1ZXVlRGVwdGggPSAwOwogICAgdmFyIHJ1bnRpbWVXcml0ZXJBY3RpdmVDb3VudCA9IDA7CiAgICB2YXIgcnVudGltZUxpc3RlbmVyR2VuZXJhdGlv";
    encoded = encoded + "bkNvdW50ZXIgPSAwOwogICAgdmFyIHJ1bnRpbWVXcml0ZXJMb2NrID0gbmV3IFJlZW50cmFudExvY2sodHJ1ZSk7CiAgICB2YXIgcnVudGltZVN0YXRlTG9jayA9IG5ldyBSZWVudHJhbnRMb2NrKHRydWUpOwoKICAgIGZ1bmN0aW9uIHJlZ2lzdHJ5R2V0KGtleSkgewogICAgICAgIHJldHVybiBJSi5nZXRQcm9wZXJ0";
    encoded = encoded + "eShTdHJpbmcoa2V5KSk7CiAgICB9CgogICAgZnVuY3Rpb24gcmVnaXN0cnlQdXQoa2V5LCB2YWx1ZSkgewogICAgICAgIElKLnNldFByb3BlcnR5KFN0cmluZyhrZXkpLCB2YWx1ZSA9PSBudWxsID8gbnVsbCA6IHZhbHVlKTsKICAgIH0KCiAgICB2YXIgZXhpc3RpbmcgPSByZWdpc3RyeUdldChSVU5USU1FX0tFWSk7";
    encoded = encoded + "CiAgICBpZiAoZXhpc3RpbmcgIT0gbnVsbCAmJiBTdHJpbmcoZXhpc3RpbmcudmVyc2lvbikgPT09IFZFUlNJT04gJiYKICAgICAgICAgICAgU3RyaW5nKGV4aXN0aW5nLmJ1aWxkSWRlbnRpdHkpID09PSBCVUlMRF9JREVOVElUWSAmJgogICAgICAgICAgICBTdHJpbmcoZXhpc3RpbmcudGVsZW1ldHJ5U2NoZW1hKSA9";
    encoded = encoded + "PT0gVEVMRU1FVFJZX1NDSEVNQSAmJgogICAgICAgICAgICB0eXBlb2YgZXhpc3RpbmcudGVsZW1ldHJ5Q29uZmlndXJlID09PSAiZnVuY3Rpb24iICYmCiAgICAgICAgICAgIHR5cGVvZiBleGlzdGluZy50ZWxlbWV0cnlTbmFwc2hvdCA9PT0gImZ1bmN0aW9uIiAmJgogICAgICAgICAgICB0eXBlb2YgZXhpc3Rpbmcu";
    encoded = encoded + "dGVsZW1ldHJ5RXZlbnQgPT09ICJmdW5jdGlvbiIgJiYKICAgICAgICAgICAgdHlwZW9mIGV4aXN0aW5nLnRlbGVtZXRyeUJsb2NrZWQgPT09ICJmdW5jdGlvbiIgJiYKICAgICAgICAgICAgdHlwZW9mIGV4aXN0aW5nLmF3YWl0RXZ0MDA2UHJlcGFyZVN3aXRjaCA9PT0gImZ1bmN0aW9uIikgewogICAgICAgIHJldHVy";
    encoded = encoded + "biBleGlzdGluZzsKICAgIH0KICAgIGlmIChleGlzdGluZyAhPSBudWxsKSB7CiAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJSVU5USU1FX0lERU5USVRZX0NPTkZMSUNUX1JFU1RBUlRfUkVRVUlSRUQiKTsKICAgIH0KCiAgICBmdW5jdGlvbiBhZGFwdGVyKHR5cGUsIGJvZHkpIHsKICAgICAgICBpZiAodHlwZW9mIEph";
    encoded = encoded + "dmFBZGFwdGVyICE9PSAidW5kZWZpbmVkIikgewogICAgICAgICAgICByZXR1cm4gbmV3IEphdmFBZGFwdGVyKHR5cGUsIGJvZHkpOwogICAgICAgIH0KICAgICAgICB2YXIgQyA9IEphdmEuZXh0ZW5kKHR5cGUpOwogICAgICAgIHJldHVybiBuZXcgQyhib2R5KTsKICAgIH0KCiAgICBmdW5jdGlvbiBzdHJpbmdWYWx1";
    encoded = encoded + "ZSh2YWx1ZSwgZmFsbGJhY2spIHsKICAgICAgICBpZiAodmFsdWUgPT0gbnVsbCkgewogICAgICAgICAgICByZXR1cm4gZmFsbGJhY2s7CiAgICAgICAgfQogICAgICAgIHJldHVybiBTdHJpbmcodmFsdWUpOwogICAgfQoKICAgIGZ1bmN0aW9uIGltYWdlUHJvcGVydHkoaW1wLCBrZXksIGZhbGxiYWNrKSB7CiAgICAg";
    encoded = encoded + "ICAgaWYgKGltcCA9PSBudWxsKSB7CiAgICAgICAgICAgIHJldHVybiBmYWxsYmFjazsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIHN0cmluZ1ZhbHVlKGltcC5nZXRQcm9wZXJ0eShrZXkpLCBmYWxsYmFjayk7CiAgICB9CgogICAgZnVuY3Rpb24gZmlyc3RJbWFnZVByb3BlcnR5KGltcCwga2V5cywgZmFsbGJhY2sp";
    encoded = encoded + "IHsKICAgICAgICB2YXIgaTsKICAgICAgICB2YXIgdmFsdWU7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IGtleXMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgdmFsdWUgPSBpbWFnZVByb3BlcnR5KGltcCwga2V5c1tpXSwgIiIpOwogICAgICAgICAgICBpZiAodmFsdWUgIT09ICIiKSB7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICByZXR1cm4gdmFsdWU7CiAgICAgICAgICAgIH0KICAgICAgICB9CiAgICAgICAgcmV0dXJuIGZhbGxiYWNrOwogICAgfQoKICAgIGZ1bmN0aW9uIHJvaVByb3BlcnR5KHJvaSwga2V5cywgZmFsbGJhY2spIHsKICAgICAgICB2YXIgaTsKICAgICAgICB2YXIgdmFsdWU7CiAgICAgICAgaWYgKHJvaSA9PSBudWxs";
    encoded = encoded + "KSB7CiAgICAgICAgICAgIHJldHVybiBmYWxsYmFjazsKICAgICAgICB9CiAgICAgICAgZm9yIChpID0gMDsgaSA8IGtleXMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgdmFsdWUgPSByb2kuZ2V0UHJvcGVydHkoa2V5c1tpXSk7CiAgICAgICAgICAgIGlmICh2YWx1ZSAhPSBudWxsICYmIFN0cmluZyh2YWx1";
    encoded = encoded + "ZSkgIT09ICIiKSB7CiAgICAgICAgICAgICAgICByZXR1cm4gU3RyaW5nKHZhbHVlKTsKICAgICAgICAgICAgfQogICAgICAgIH0KICAgICAgICByZXR1cm4gZmFsbGJhY2s7CiAgICB9CgogICAgZnVuY3Rpb24gc2VsZWN0ZWRSb2koaW1wKSB7CiAgICAgICAgdmFyIG1hbmFnZXIgPSBSb2lNYW5hZ2VyLmdldEluc3Rh";
    encoded = encoded + "bmNlMigpOwogICAgICAgIHZhciBpbmRleDsKICAgICAgICBpZiAobWFuYWdlciA9PSBudWxsKSB7CiAgICAgICAgICAgIHJldHVybiBpbXAgPT0gbnVsbCA/IG51bGwgOiBpbXAuZ2V0Um9pKCk7CiAgICAgICAgfQogICAgICAgIGluZGV4ID0gbWFuYWdlci5nZXRTZWxlY3RlZEluZGV4KCk7CiAgICAgICAgaWYgKGlu";
    encoded = encoded + "ZGV4ID49IDAgJiYgaW5kZXggPCBtYW5hZ2VyLmdldENvdW50KCkpIHsKICAgICAgICAgICAgcmV0dXJuIG1hbmFnZXIuZ2V0Um9pKGluZGV4KTsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIGltcCA9PSBudWxsID8gbnVsbCA6IGltcC5nZXRSb2koKTsKICAgIH0KCiAgICBmdW5jdGlvbiBub3JtYWxpemVJbnRlcmFj";
    encoded = encoded + "dGl2ZVJvaVR5cGUodmFsdWUpIHsKICAgICAgICB2YXIgdHlwZSA9IFN0cmluZyh2YWx1ZSA9PSBudWxsID8gIiIgOiB2YWx1ZSk7CiAgICAgICAgaWYgKHR5cGUgPT09ICJhbmFseXNpc19hcmVhIiB8fCB0eXBlID09PSAibWFzayIpIHsKICAgICAgICAgICAgcmV0dXJuICJhbmFseXNpc19tYXNrIjsKICAgICAgICB9";
    encoded = encoded + "CiAgICAgICAgaWYgKHR5cGUgPT09ICJzdXJmYWNlIikgewogICAgICAgICAgICByZXR1cm4gInN1cmZhY2VfcmVmZXJlbmNlIjsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIHR5cGU7CiAgICB9CgogICAgZnVuY3Rpb24gcm9pVHlwZShyb2kpIHsKICAgICAgICB2YXIgcHJpbWFyeSA9IG5vcm1hbGl6ZUludGVyYWN0";
    encoded = encoded + "aXZlUm9pVHlwZShyb2lQcm9wZXJ0eShyb2ksIFsiVHlwZSJdLCAiIikpOwogICAgICAgIHZhciBhbGlhcyA9IG5vcm1hbGl6ZUludGVyYWN0aXZlUm9pVHlwZShyb2lQcm9wZXJ0eShyb2ksIFsiT2JqZWN0X3R5cGUiXSwgIiIpKTsKICAgICAgICBpZiAocHJpbWFyeSAhPT0gIiIgJiYgYWxpYXMgIT09ICIiICYmIHBy";
    encoded = encoded + "aW1hcnkgIT09IGFsaWFzKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5URVJBQ1RJVkVfVEFSR0VUX1RZUEVfRElWRVJHRU5UIik7CiAgICAgICAgfQogICAgICAgIHJldHVybiBwcmltYXJ5ICE9PSAiIiA/IHByaW1hcnkgOiBhbGlhczsKICAgIH0KCiAgICBmdW5jdGlvbiByb2lDYXZpdHlJZChyb2kp";
    encoded = encoded + "IHsKICAgICAgICB2YXIgcHJpbWFyeSA9IHJvaVByb3BlcnR5KHJvaSwgWyJDYXZpdHlfaWQiXSwgIiIpOwogICAgICAgIHZhciBhbGlhcyA9IHJvaVByb3BlcnR5KHJvaSwgWyJjYXZpdHlfaWQiXSwgIiIpOwogICAgICAgIGlmIChwcmltYXJ5ICE9PSAiIiAmJiBhbGlhcyAhPT0gIiIgJiYgcHJpbWFyeSAhPT0gYWxp";
    encoded = encoded + "YXMpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJJTlRFUkFDVElWRV9UQVJHRVRfQ0FWSVRZX0lEX0RJVkVSR0VOVCIpOwogICAgICAgIH0KICAgICAgICByZXR1cm4gcHJpbWFyeSAhPT0gIiIgPyBwcmltYXJ5IDogKGFsaWFzICE9PSAiIiA/IGFsaWFzIDogIk5PVF9BUFBMSUNBQkxFIik7CiAgICB9Cgog";
    encoded = encoded + "ICAgZnVuY3Rpb24gaXNDYXZpdHlSb2kocm9pKSB7CiAgICAgICAgcmV0dXJuIHJvaSAhPSBudWxsICYmIHJvaVR5cGUocm9pKSA9PT0gImNhdml0eSI7CiAgICB9CgogICAgZnVuY3Rpb24gaXNLbm93bk5vbkNhdml0eVJvaShyb2kpIHsKICAgICAgICB2YXIgdHlwZTsKICAgICAgICBpZiAocm9pID09IG51bGwpIHsK";
    encoded = encoded + "ICAgICAgICAgICAgcmV0dXJuIHRydWU7CiAgICAgICAgfQogICAgICAgIHR5cGUgPSByb2lUeXBlKHJvaSk7CiAgICAgICAgcmV0dXJuIHR5cGUgPT09ICJzZXNzaW9uX21ldGFkYXRhIiB8fCB0eXBlID09PSAiYW5hbHlzaXNfbWFzayIgfHwKICAgICAgICAgICAgdHlwZSA9PT0gImV4Y2x1c2lvbiIgfHwgdHlwZSA9";
    encoded = encoded + "PT0gInBhbmVsIiB8fAogICAgICAgICAgICB0eXBlID09PSAiZGlzbG9jYXRpb25fbG9vcCIgfHwgdHlwZSA9PT0gImdyYWluX2JvdW5kYXJ5IiB8fAogICAgICAgICAgICB0eXBlID09PSAiZGlzbG9jYXRpb24iIHx8IHR5cGUgPT09ICJpbnRlcmZhY2UiIHx8CiAgICAgICAgICAgIHR5cGUgPT09ICJzY2FsZV9yZWZl";
    encoded = encoded + "cmVuY2UiIHx8IHR5cGUgPT09ICJzY2FsZV9sYWJlbCIgfHwKICAgICAgICAgICAgdHlwZSA9PT0gInN1cmZhY2VfcmVmZXJlbmNlIjsKICAgIH0KCiAgICBmdW5jdGlvbiBpc1Bhc3NpdmVOb0VkaXRSb2kocm9pKSB7CiAgICAgICAgcmV0dXJuIHJvaSA9PSBudWxsIHx8IHJvaVR5cGUocm9pKSA9PT0gInNlc3Npb25f";
    encoded = encoded + "bWV0YWRhdGEiOwogICAgfQoKICAgIGZ1bmN0aW9uIGRpYWdub3N0aWNTdWJjb2RlKGVycm9yLCBmYWxsYmFjaykgewogICAgICAgIHZhciB0ZXh0ID0gZXJyb3IgPT0gbnVsbCA/ICIiIDogU3RyaW5nKGVycm9yLm1lc3NhZ2UgfHwgZXJyb3IpOwogICAgICAgIHZhciBjb2xvbiA9IHRleHQuaW5kZXhPZigiOiIpOwog";
    encoded = encoded + "ICAgICAgIHZhciBjYW5kaWRhdGUgPSAoY29sb24gPCAwID8gdGV4dCA6IHRleHQuc3Vic3RyaW5nKDAsIGNvbG9uKSkucmVwbGFjZSgvXlxzK3xccyskL2csICIiKTsKICAgICAgICB2YXIgc2FmZUZhbGxiYWNrID0gU3RyaW5nKGZhbGxiYWNrIHx8ICJST0xMQkFDS19GQUlMVVJFX1VOQ0xBU1NJRklFRCIpOwogICAg";
    encoded = encoded + "ICAgIHZhciBhbGxvd2VkID0gewogICAgICAgICAgICBJTlRFUkFDVElWRV9UQVJHRVRfQ0FWSVRZX0lEX0RJVkVSR0VOVDogdHJ1ZSwKICAgICAgICAgICAgSU5URVJBQ1RJVkVfVEFSR0VUX0NBVklUWV9JRF9JTlZBTElEOiB0cnVlLAogICAgICAgICAgICBJTlRFUkFDVElWRV9UQVJHRVRfSURFTlRJVFlfRElWRVJH";
    encoded = encoded + "RU5UOiB0cnVlLAogICAgICAgICAgICBJTlRFUkFDVElWRV9UQVJHRVRfTUFOQUdFUl9PUl9JTUFHRV9BQlNFTlQ6IHRydWUsCiAgICAgICAgICAgIElOVEVSQUNUSVZFX1RBUkdFVF9SRUNPTkNJTElBVElPTl9GQUlMRUQ6IHRydWUsCiAgICAgICAgICAgIElOVEVSQUNUSVZFX1RBUkdFVF9SRVNPTFVUSU9OX0ZBSUxF";
    encoded = encoded + "RDogdHJ1ZSwKICAgICAgICAgICAgSU5URVJBQ1RJVkVfVEFSR0VUX1NFTEVDVEVEX0lOREVYX0RJVkVSR0VOVDogdHJ1ZSwKICAgICAgICAgICAgSU5URVJBQ1RJVkVfVEFSR0VUX1NFTEVDVElPTl9ESVZFUkdFTlQ6IHRydWUsCiAgICAgICAgICAgIElOVEVSQUNUSVZFX1RBUkdFVF9TVEFURV9ESVZFUkdFTlQ6IHRy";
    encoded = encoded + "dWUsCiAgICAgICAgICAgIElOVEVSQUNUSVZFX1RBUkdFVF9UWVBFX0RJVkVSR0VOVDogdHJ1ZSwKICAgICAgICAgICAgSU5URVJBQ1RJVkVfVEFSR0VUX1RZUEVfVU5LTk9XTjogdHJ1ZSwKICAgICAgICAgICAgSU5URVJBQ1RJVkVfVEFSR0VUX1VVSURfRElWRVJHRU5UOiB0cnVlLAogICAgICAgICAgICBJTlRFUkFD";
    encoded = encoded + "VElWRV9UQVJHRVRfVVVJRF9EVVBMSUNBVEU6IHRydWUsCiAgICAgICAgICAgIElOVEVSQUNUSVZFX1RBUkdFVF9VVUlEX0lOVkFMSUQ6IHRydWUsCiAgICAgICAgICAgIElOVEVSQUNUSVZFX1RBUkdFVF9VVUlEX05PVF9JTl9NQU5BR0VSOiB0cnVlLAogICAgICAgICAgICBJTlZBTElEX09QRVJBVElPTl9DT05URVhU";
    encoded = encoded + "OiB0cnVlLAogICAgICAgICAgICBNT1VTRV9ST0xMQkFDS19PV05FUl9VUERBVEVfRkFJTEVEOiB0cnVlLAogICAgICAgICAgICBQRU5ESU5HX1JPTExCQUNLX09XTkVSX0lOVEVSVkVORUQ6IHRydWUsCiAgICAgICAgICAgIFJPSV9TVEFURV9BQlNFTlQ6IHRydWUsCiAgICAgICAgICAgIFJPSV9TVEFURV9TRVJJQUxJ";
    encoded = encoded + "WkFUSU9OX0ZBSUxFRDogdHJ1ZSwKICAgICAgICAgICAgUk9MTEJBQ0tfQkFTRUxJTkVfQ09OVEVYVF9NSVNNQVRDSDogdHJ1ZSwKICAgICAgICAgICAgUk9MTEJBQ0tfQkFTRUxJTkVfRkFJTFVSRV9VTkNMQVNTSUZJRUQ6IHRydWUsCiAgICAgICAgICAgIFJPTExCQUNLX0JBU0VMSU5FX05PVF9FWEFDVDogdHJ1ZSwK";
    encoded = encoded + "ICAgICAgICAgICAgUk9MTEJBQ0tfQkFTRUxJTkVfVU5WRVJJRklFRDogdHJ1ZSwKICAgICAgICAgICAgUk9MTEJBQ0tfQUNUSVZFX1NUQVRFX0RJVkVSR0VOVDogdHJ1ZSwKICAgICAgICAgICAgUk9MTEJBQ0tfQUNUSVZFX1RBUkdFVF9JTlZBTElEOiB0cnVlLAogICAgICAgICAgICBST0xMQkFDS19DT05URVhUX01J";
    encoded = encoded + "U01BVENIOiB0cnVlLAogICAgICAgICAgICBST0xMQkFDS19FWENFUFRJT046IHRydWUsCiAgICAgICAgICAgIFJPTExCQUNLX0ZBSUxVUkVfVU5DTEFTU0lGSUVEOiB0cnVlLAogICAgICAgICAgICBST0xMQkFDS19PV05FUl9QUkVDT05ESVRJT05fRkFJTEVEOiB0cnVlLAogICAgICAgICAgICBST0xMQkFDS19QT1NU";
    encoded = encoded + "Q09ORElUSU9OX0ZBSUxFRDogdHJ1ZSwKICAgICAgICAgICAgV0hFRUxfUk9MTEJBQ0tfT1dORVJfVVBEQVRFX0ZBSUxFRDogdHJ1ZQogICAgICAgIH07CiAgICAgICAgaWYgKE9iamVjdC5wcm90b3R5cGUuaGFzT3duUHJvcGVydHkuY2FsbChhbGxvd2VkLCBjYW5kaWRhdGUpKSB7CiAgICAgICAgICAgIHJldHVybiBj";
    encoded = encoded + "YW5kaWRhdGU7CiAgICAgICAgfQogICAgICAgIGlmIChPYmplY3QucHJvdG90eXBlLmhhc093blByb3BlcnR5LmNhbGwoYWxsb3dlZCwgc2FmZUZhbGxiYWNrKSkgewogICAgICAgICAgICByZXR1cm4gc2FmZUZhbGxiYWNrOwogICAgICAgIH0KICAgICAgICByZXR1cm4gIlJPTExCQUNLX0ZBSUxVUkVfVU5DTEFTU0lG";
    encoded = encoded + "SUVEIjsKICAgIH0KCiAgICBmdW5jdGlvbiByZXNvbHZlSW50ZXJhY3RpdmVDYXZpdHlUYXJnZXQoaW1wKSB7CiAgICAgICAgdmFyIG1hbmFnZXIgPSBSb2lNYW5hZ2VyLmdldEluc3RhbmNlMigpOwogICAgICAgIHZhciBtYW5hZ2VyU2VsZWN0ZWRJbmRleDsKICAgICAgICB2YXIgbWFuYWdlclNlbGVjdGVkUm9pOwog";
    encoded = encoded + "ICAgICAgIHZhciBpbWFnZVJvaTsKICAgICAgICB2YXIgdGFyZ2V0VXVpZDsKICAgICAgICB2YXIgdGFyZ2V0Q2F2aXR5SWQ7CiAgICAgICAgdmFyIHRhcmdldEluZGV4OwogICAgICAgIHZhciBtYW5hZ2VyVGFyZ2V0OwogICAgICAgIHZhciB0YXJnZXRTdGF0ZTsKICAgICAgICB2YXIgbWFuYWdlclN0YXRlOwogICAg";
    encoded = encoded + "ICAgIHZhciByZXNvbHZlZFJvaTsKICAgICAgICBpZiAoaW1wID09IG51bGwgfHwgbWFuYWdlciA9PSBudWxsKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5URVJBQ1RJVkVfVEFSR0VUX01BTkFHRVJfT1JfSU1BR0VfQUJTRU5UIik7CiAgICAgICAgfQogICAgICAgIG1hbmFnZXJTZWxlY3RlZEluZGV4";
    encoded = encoded + "ID0gbWFuYWdlci5nZXRTZWxlY3RlZEluZGV4KCk7CiAgICAgICAgbWFuYWdlclNlbGVjdGVkUm9pID0gbWFuYWdlclNlbGVjdGVkSW5kZXggPj0gMCAmJgogICAgICAgICAgICBtYW5hZ2VyU2VsZWN0ZWRJbmRleCA8IG1hbmFnZXIuZ2V0Q291bnQoKSA/CiAgICAgICAgICAgICAgICBtYW5hZ2VyLmdldFJvaShtYW5h";
    encoded = encoded + "Z2VyU2VsZWN0ZWRJbmRleCkgOiBudWxsOwogICAgICAgIGltYWdlUm9pID0gaW1wLmdldFJvaSgpOwogICAgICAgIGlmICghaXNDYXZpdHlSb2koaW1hZ2VSb2kpICYmICFpc0Nhdml0eVJvaShtYW5hZ2VyU2VsZWN0ZWRSb2kpKSB7CiAgICAgICAgICAgIGlmICghaXNLbm93bk5vbkNhdml0eVJvaShpbWFnZVJvaSkg";
    encoded = encoded + "fHwKICAgICAgICAgICAgICAgICAgICAhaXNLbm93bk5vbkNhdml0eVJvaShtYW5hZ2VyU2VsZWN0ZWRSb2kpKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVEVSQUNUSVZFX1RBUkdFVF9UWVBFX1VOS05PV04iKTsKICAgICAgICAgICAgfQogICAgICAgICAgICByZXR1cm4gewogICAgICAgICAg";
    encoded = encoded + "ICAgICAgc3RhdHVzOiAiTk9fRURJVF9UQVJHRVQiLCByb2k6IG51bGwsIGluZGV4OiAtMSwgbWFuYWdlcjogbWFuYWdlciwKICAgICAgICAgICAgICAgIGNvbnN1bWVfZXZlbnQ6ICEoaXNQYXNzaXZlTm9FZGl0Um9pKGltYWdlUm9pKSAmJgogICAgICAgICAgICAgICAgICAgIGlzUGFzc2l2ZU5vRWRpdFJvaShtYW5h";
    encoded = encoded + "Z2VyU2VsZWN0ZWRSb2kpKQogICAgICAgICAgICB9OwogICAgICAgIH0KICAgICAgICBpZiAoIWlzQ2F2aXR5Um9pKGltYWdlUm9pKSB8fCAhaXNDYXZpdHlSb2kobWFuYWdlclNlbGVjdGVkUm9pKSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVEVSQUNUSVZFX1RBUkdFVF9TRUxFQ1RJT05fRElWRVJH";
    encoded = encoded + "RU5UIik7CiAgICAgICAgfQogICAgICAgIHRhcmdldFV1aWQgPSByb2lVdWlkKGltYWdlUm9pKTsKICAgICAgICB0YXJnZXRDYXZpdHlJZCA9IHJvaUNhdml0eUlkKGltYWdlUm9pKTsKICAgICAgICBpZiAoIS9eWzAtOWEtZl17OH0tWzAtOWEtZl17NH0tWzAtOWEtZl17NH0tWzAtOWEtZl17NH0tWzAtOWEtZl17MTJ9";
    encoded = encoded + "JC8udGVzdCgKICAgICAgICAgICAgICAgIHRhcmdldFV1aWQpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5URVJBQ1RJVkVfVEFSR0VUX1VVSURfSU5WQUxJRCIpOwogICAgICAgIH0KICAgICAgICBpZiAoIS9eQ0FWX1swLTldezZ9JC8udGVzdCh0YXJnZXRDYXZpdHlJZCkpIHsKICAgICAgICAgICAg";
    encoded = encoded + "dGhyb3cgbmV3IEVycm9yKCJJTlRFUkFDVElWRV9UQVJHRVRfQ0FWSVRZX0lEX0lOVkFMSUQiKTsKICAgICAgICB9CiAgICAgICAgdGFyZ2V0SW5kZXggPSB1bmlxdWVSb2lJbmRleChtYW5hZ2VyLCB0YXJnZXRVdWlkKTsKICAgICAgICBpZiAodGFyZ2V0SW5kZXggPT09IC0yKSB7CiAgICAgICAgICAgIHRocm93IG5l";
    encoded = encoded + "dyBFcnJvcigiSU5URVJBQ1RJVkVfVEFSR0VUX1VVSURfRFVQTElDQVRFIik7CiAgICAgICAgfQogICAgICAgIGlmICh0YXJnZXRJbmRleCA8IDApIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJJTlRFUkFDVElWRV9UQVJHRVRfVVVJRF9OT1RfSU5fTUFOQUdFUiIpOwogICAgICAgIH0KICAgICAgICBtYW5h";
    encoded = encoded + "Z2VyVGFyZ2V0ID0gbWFuYWdlci5nZXRSb2kodGFyZ2V0SW5kZXgpOwogICAgICAgIGlmICghaXNDYXZpdHlSb2kobWFuYWdlclRhcmdldCkgfHwgcm9pQ2F2aXR5SWQobWFuYWdlclRhcmdldCkgIT09IHRhcmdldENhdml0eUlkKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5URVJBQ1RJVkVfVEFSR0VU";
    encoded = encoded + "X0lERU5USVRZX0RJVkVSR0VOVCIpOwogICAgICAgIH0KICAgICAgICBpZiAocm9pVXVpZChtYW5hZ2VyU2VsZWN0ZWRSb2kpICE9PSB0YXJnZXRVdWlkIHx8CiAgICAgICAgICAgICAgICByb2lDYXZpdHlJZChtYW5hZ2VyU2VsZWN0ZWRSb2kpICE9PSB0YXJnZXRDYXZpdHlJZCkgewogICAgICAgICAgICB0aHJvdyBu";
    encoded = encoded + "ZXcgRXJyb3IoIklOVEVSQUNUSVZFX1RBUkdFVF9TRUxFQ1RJT05fRElWRVJHRU5UIik7CiAgICAgICAgfQogICAgICAgIGlmIChtYW5hZ2VyU2VsZWN0ZWRJbmRleCAhPT0gdGFyZ2V0SW5kZXgpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJJTlRFUkFDVElWRV9UQVJHRVRfU0VMRUNURURfSU5ERVhfRElW";
    encoded = encoded + "RVJHRU5UIik7CiAgICAgICAgfQogICAgICAgIHRhcmdldFN0YXRlID0gcm9pU3RhdGVTaGEyNTYoaW1hZ2VSb2kpOwogICAgICAgIG1hbmFnZXJTdGF0ZSA9IHJvaVN0YXRlU2hhMjU2KG1hbmFnZXJUYXJnZXQpOwogICAgICAgIGlmICh0YXJnZXRTdGF0ZSAhPT0gbWFuYWdlclN0YXRlIHx8CiAgICAgICAgICAgICAg";
    encoded = encoded + "ICByb2lTdGF0ZVNoYTI1NihtYW5hZ2VyU2VsZWN0ZWRSb2kpICE9PSBtYW5hZ2VyU3RhdGUpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJJTlRFUkFDVElWRV9UQVJHRVRfU1RBVEVfRElWRVJHRU5UIik7CiAgICAgICAgfQogICAgICAgIHJlc29sdmVkUm9pID0gaW1wLmdldFJvaSgpOwogICAgICAgIGlm";
    encoded = encoded + "IChtYW5hZ2VyLmdldFNlbGVjdGVkSW5kZXgoKSAhPT0gdGFyZ2V0SW5kZXggfHwKICAgICAgICAgICAgICAgIHJvaVV1aWQocmVzb2x2ZWRSb2kpICE9PSB0YXJnZXRVdWlkIHx8CiAgICAgICAgICAgICAgICByb2lDYXZpdHlJZChyZXNvbHZlZFJvaSkgIT09IHRhcmdldENhdml0eUlkIHx8CiAgICAgICAgICAgICAg";
    encoded = encoded + "ICByb2lTdGF0ZVNoYTI1NihyZXNvbHZlZFJvaSkgIT09IG1hbmFnZXJTdGF0ZSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVEVSQUNUSVZFX1RBUkdFVF9SRUNPTkNJTElBVElPTl9GQUlMRUQiKTsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIHsKICAgICAgICAgICAgc3RhdHVzOiAiQ0FWSVRZIiwg";
    encoded = encoded + "cm9pOiByZXNvbHZlZFJvaSwgaW5kZXg6IHRhcmdldEluZGV4LAogICAgICAgICAgICB1dWlkOiB0YXJnZXRVdWlkLCBjYXZpdHlfaWQ6IHRhcmdldENhdml0eUlkLCBtYW5hZ2VyOiBtYW5hZ2VyCiAgICAgICAgfTsKICAgIH0KCiAgICBmdW5jdGlvbiBzaGEyNTZUZXh0KHRleHQpIHsKICAgICAgICB2YXIgZGlnZXN0";
    encoded = encoded + "ID0gTWVzc2FnZURpZ2VzdC5nZXRJbnN0YW5jZSgiU0hBLTI1NiIpOwogICAgICAgIGRpZ2VzdC51cGRhdGUobmV3IGphdmEubGFuZy5TdHJpbmcoU3RyaW5nKHRleHQpKS5nZXRCeXRlcyhTdGFuZGFyZENoYXJzZXRzLlVURl84KSk7CiAgICAgICAgcmV0dXJuIGhleChkaWdlc3QuZGlnZXN0KCkpOwogICAgfQoKICAg";
    encoded = encoded + "IGZ1bmN0aW9uIHNoYTI1NkJ5dGVzKGJ5dGVzKSB7CiAgICAgICAgdmFyIGRpZ2VzdCA9IE1lc3NhZ2VEaWdlc3QuZ2V0SW5zdGFuY2UoIlNIQS0yNTYiKTsKICAgICAgICBkaWdlc3QudXBkYXRlKGJ5dGVzKTsKICAgICAgICByZXR1cm4gaGV4KGRpZ2VzdC5kaWdlc3QoKSk7CiAgICB9CgogICAgZnVuY3Rpb24gaGV4";
    encoded = encoded + "KGJ5dGVzKSB7CiAgICAgICAgdmFyIG91dCA9ICIiOwogICAgICAgIHZhciBpOwogICAgICAgIHZhciB2YWx1ZTsKICAgICAgICBmb3IgKGkgPSAwOyBpIDwgYnl0ZXMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgdmFsdWUgPSBieXRlc1tpXTsKICAgICAgICAgICAgaWYgKHZhbHVlIDwgMCkgewogICAgICAg";
    encoded = encoded + "ICAgICAgICAgdmFsdWUgKz0gMjU2OwogICAgICAgICAgICB9CiAgICAgICAgICAgIGlmICh2YWx1ZSA8IDE2KSB7CiAgICAgICAgICAgICAgICBvdXQgKz0gIjAiOwogICAgICAgICAgICB9CiAgICAgICAgICAgIG91dCArPSB2YWx1ZS50b1N0cmluZygxNik7CiAgICAgICAgfQogICAgICAgIHJldHVybiBvdXQ7CiAg";
    encoded = encoded + "ICB9CgogICAgZnVuY3Rpb24gdW5zaWduZWRCeXRlKHZhbHVlKSB7CiAgICAgICAgcmV0dXJuIHZhbHVlIDwgMCA/IHZhbHVlICsgMjU2IDogdmFsdWU7CiAgICB9CgogICAgZnVuY3Rpb24gYnl0ZUFycmF5KGxlbmd0aCkgewogICAgICAgIHJldHVybiBqYXZhLmxhbmcucmVmbGVjdC5BcnJheS5uZXdJbnN0YW5jZShq";
    encoded = encoded + "YXZhLmxhbmcuQnl0ZS5UWVBFLCBsZW5ndGgpOwogICAgfQoKICAgIGZ1bmN0aW9uIHNldFVuc2lnbmVkQnl0ZShieXRlcywgaW5kZXgsIHZhbHVlKSB7CiAgICAgICAgYnl0ZXNbaW5kZXhdID0gdmFsdWUgPiAxMjcgPyB2YWx1ZSAtIDI1NiA6IHZhbHVlOwogICAgfQoKICAgIGZ1bmN0aW9uIGNvcHlCeXRlUmFuZ2Uo";
    encoded = encoded + "Ynl0ZXMsIHN0YXJ0LCBsZW5ndGgpIHsKICAgICAgICB2YXIgb3V0ID0gYnl0ZUFycmF5KGxlbmd0aCk7CiAgICAgICAgdmFyIGk7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IGxlbmd0aDsgaSArPSAxKSB7CiAgICAgICAgICAgIG91dFtpXSA9IGJ5dGVzW3N0YXJ0ICsgaV07CiAgICAgICAgfQogICAgICAgIHJldHVy";
    encoded = encoded + "biBvdXQ7CiAgICB9CgogICAgZnVuY3Rpb24gYXNjaWlCeXRlcyh0ZXh0KSB7CiAgICAgICAgcmV0dXJuIG5ldyBqYXZhLmxhbmcuU3RyaW5nKFN0cmluZyh0ZXh0KSkuZ2V0Qnl0ZXMoU3RhbmRhcmRDaGFyc2V0cy5VU19BU0NJSSk7CiAgICB9CgogICAgZnVuY3Rpb24gc2FtZUJ5dGVSYW5nZShieXRlcywgc3RhcnQs";
    encoded = encoded + "IGxlbmd0aCwgZXhwZWN0ZWQpIHsKICAgICAgICB2YXIgaTsKICAgICAgICBpZiAobGVuZ3RoICE9PSBleHBlY3RlZC5sZW5ndGgpIHsKICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0KICAgICAgICBmb3IgKGkgPSAwOyBpIDwgbGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgaWYgKHVuc2lnbmVk";
    encoded = encoded + "Qnl0ZShieXRlc1tzdGFydCArIGldKSAhPT0gdW5zaWduZWRCeXRlKGV4cGVjdGVkW2ldKSkgewogICAgICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgICAgICB9CiAgICAgICAgfQogICAgICAgIHJldHVybiB0cnVlOwogICAgfQoKICAgIGZ1bmN0aW9uIHZhbGlkYXRlSHVtYW5JZCh2YWx1ZSwgbGFiZWwp";
    encoded = encoded + "IHsKICAgICAgICB2YXIgdGV4dCA9IFN0cmluZyh2YWx1ZSk7CiAgICAgICAgdmFyIGJhc2U7CiAgICAgICAgaWYgKCEvXltBLVphLXowLTldW0EtWmEtejAtOS5fLV17MCw2M30kLy50ZXN0KHRleHQpIHx8CiAgICAgICAgICAgICAgICB0ZXh0ID09PSAiVU5LTk9XTiIgfHwgdGV4dCA9PT0gIk5PVF9BUFBMSUNBQkxF";
    encoded = encoded + "IiB8fCB0ZXh0ID09PSAiTkEiIHx8CiAgICAgICAgICAgICAgICB0ZXh0LmluZGV4T2YoIi4uIikgPj0gMCB8fCAvWy4gXSQvLnRlc3QodGV4dCkpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJCTE9DS0VEX1JFVklFVzogaW52YWxpZCAiICsgbGFiZWwpOwogICAgICAgIH0KICAgICAgICBiYXNlID0gdGV4";
    encoded = encoded + "dC5zcGxpdCgiLiIpWzBdLnRvVXBwZXJDYXNlKCk7CiAgICAgICAgaWYgKC9eKENPTnxQUk58QVVYfE5VTHxDT01bMS05XXxMUFRbMS05XSkkLy50ZXN0KGJhc2UpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQkxPQ0tFRF9SRVZJRVc6IHJlc2VydmVkICIgKyBsYWJlbCk7CiAgICAgICAgfQogICAgICAg";
    encoded = encoded + "IHJldHVybiB0ZXh0OwogICAgfQoKICAgIGZ1bmN0aW9uIGV4YWN0T2JqZWN0S2V5cyh2YWx1ZSwgZXhwZWN0ZWQsIGxhYmVsKSB7CiAgICAgICAgdmFyIGtleXM7CiAgICAgICAgdmFyIHdhbnRlZCA9IGV4cGVjdGVkLnNsaWNlKDApOwogICAgICAgIGlmICh2YWx1ZSA9PSBudWxsIHx8IE9iamVjdC5wcm90b3R5cGUu";
    encoded = encoded + "dG9TdHJpbmcuY2FsbCh2YWx1ZSkgIT09ICJbb2JqZWN0IE9iamVjdF0iKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5WQUxJRF8iICsgbGFiZWwgKyAiOiBvYmplY3QgcmVxdWlyZWQiKTsKICAgICAgICB9CiAgICAgICAga2V5cyA9IE9iamVjdC5rZXlzKHZhbHVlKS5zb3J0KCk7CiAgICAgICAgd2Fu";
    encoded = encoded + "dGVkLnNvcnQoKTsKICAgICAgICBpZiAoa2V5cy5qb2luKCJcbiIpICE9PSB3YW50ZWQuam9pbigiXG4iKSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVkFMSURfIiArIGxhYmVsICsgIjogZmllbGRzIGFyZSBub3QgZXhhY3QiKTsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIHZhbHVlOwogICAgfQoK";
    encoded = encoded + "ICAgIGZ1bmN0aW9uIHRlbGVtZXRyeUVudW0odGFibGUsIHZhbHVlLCBmYWxsYmFjaywgbGFiZWwpIHsKICAgICAgICB2YXIgdGV4dCA9IHZhbHVlID09IG51bGwgfHwgU3RyaW5nKHZhbHVlKSA9PT0gIiIgPyBmYWxsYmFjayA6IFN0cmluZyh2YWx1ZSk7CiAgICAgICAgaWYgKCF0YWJsZVt0ZXh0XSkgewogICAgICAg";
    encoded = encoded + "ICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9JTlZBTElEXyIgKyBsYWJlbCk7CiAgICAgICAgfQogICAgICAgIHJldHVybiB0ZXh0OwogICAgfQoKICAgIGZ1bmN0aW9uIHRlbGVtZXRyeU51bGxhYmxlKHZhbHVlKSB7CiAgICAgICAgdmFyIHRleHQ7CiAgICAgICAgaWYgKHZhbHVlID09IG51bGwgfHwgU3Ry";
    encoded = encoded + "aW5nKHZhbHVlKSA9PT0gIiIgfHwgU3RyaW5nKHZhbHVlKSA9PT0gIk5PVF9BUFBMSUNBQkxFIikgewogICAgICAgICAgICByZXR1cm4gbnVsbDsKICAgICAgICB9CiAgICAgICAgdGV4dCA9IFN0cmluZyh2YWx1ZSk7CiAgICAgICAgaWYgKHRleHQubGVuZ3RoID4gMTI4IHx8IC9bXHgwMC1ceDFmXHg3Zl0vLnRlc3Qo";
    encoded = encoded + "dGV4dCkgfHwgL1tcXC9dLy50ZXN0KHRleHQpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiVEVMRU1FVFJZX0lOVkFMSURfSURFTlRJRklFUiIpOwogICAgICAgIH0KICAgICAgICByZXR1cm4gdGV4dDsKICAgIH0KCiAgICBmdW5jdGlvbiB0ZWxlbWV0cnlTaGEodmFsdWUpIHsKICAgICAgICBpZiAodmFs";
    encoded = encoded + "dWUgPT0gbnVsbCB8fCBTdHJpbmcodmFsdWUpID09PSAiIikgewogICAgICAgICAgICByZXR1cm4gbnVsbDsKICAgICAgICB9CiAgICAgICAgaWYgKCEvXlswLTlhLWZdezY0fSQvLnRlc3QoU3RyaW5nKHZhbHVlKSkpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJURUxFTUVUUllfSU5WQUxJRF9TSEEyNTYi";
    encoded = encoded + "KTsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIFN0cmluZyh2YWx1ZSk7CiAgICB9CgogICAgZnVuY3Rpb24gdGVsZW1ldHJ5RGV0YWlsKHZhbHVlKSB7CiAgICAgICAgdmFyIHRleHQgPSB2YWx1ZSA9PSBudWxsIHx8IFN0cmluZyh2YWx1ZSkgPT09ICIiID8gIk5PTkUiIDogU3RyaW5nKHZhbHVlKTsKICAgICAgICBp";
    encoded = encoded + "ZiAoIS9eW0EtWjAtOV9dezEsNjR9JC8udGVzdCh0ZXh0KSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9JTlZBTElEX0RFVEFJTF9DT0RFIik7CiAgICAgICAgfQogICAgICAgIHJldHVybiB0ZXh0OwogICAgfQoKICAgIGZ1bmN0aW9uIHRlbGVtZXRyeU9wZXJhdGlvbih2YWx1ZSkgewog";
    encoded = encoded + "ICAgICAgIHZhciB0ZXh0ID0gU3RyaW5nKHZhbHVlID09IG51bGwgPyAiIiA6IHZhbHVlKS50b0xvd2VyQ2FzZSgpOwogICAgICAgIGlmICh0ZXh0ID09PSAic2F2ZV9yZXZpc2lvbiIgfHwgdGV4dC5pbmRleE9mKCJndWFyZGFyIG51ZXZhIHJldmlzaW9uIikgPj0gMCB8fAogICAgICAgICAgICAgICAgdGV4dC5pbmRl";
    encoded = encoded + "eE9mKCJzYXZlIHJldmlzaW9uIikgPj0gMCkgewogICAgICAgICAgICByZXR1cm4gIlNBVkVfUkVWSVNJT04iOwogICAgICAgIH0KICAgICAgICBpZiAodGV4dCA9PT0gImV4cG9ydF9ydW4iIHx8IHRleHQgPT09ICJjb21iaW5lZF9hbmFseXNpcyIgfHwKICAgICAgICAgICAgICAgIHRleHQuaW5kZXhPZigiZXhwb3J0";
    encoded = encoded + "YXIgcmVzdWx0YWRvcyIpID49IDAgfHwKICAgICAgICAgICAgICAgIHRleHQuaW5kZXhPZigiY29tYmluZWQgYW5hbHlzaXMiKSA+PSAwKSB7CiAgICAgICAgICAgIHJldHVybiAiRVhQT1JUX1JVTiI7CiAgICAgICAgfQogICAgICAgIGlmICh0ZXh0ID09PSAic2VsZWN0X3Byb2plY3RfaW1hZ2UiIHx8IHRleHQgPT09";
    encoded = encoded + "ICJpbWFnZV9zd2l0Y2giIHx8CiAgICAgICAgICAgICAgICB0ZXh0LmluZGV4T2YoInNlbGVjY2lvbmFyIGltYWdlbiIpID49IDApIHsKICAgICAgICAgICAgcmV0dXJuICJTRUxFQ1RfUFJPSkVDVF9JTUFHRSI7CiAgICAgICAgfQogICAgICAgIGlmICh0ZXh0ID09PSAidmFsaWRhdGUiIHx8IHRleHQgPT09ICJ2ZXJp";
    encoded = encoded + "ZnlfbWFzdGVyIiB8fAogICAgICAgICAgICAgICAgdGV4dC5pbmRleE9mKCJ2YWxpZGFyIGltYWdlbiIpID49IDApIHsKICAgICAgICAgICAgcmV0dXJuICJWRVJJRllfTUFTVEVSIjsKICAgICAgICB9CiAgICAgICAgaWYgKHRleHQgPT09ICJsaXN0ZW5lcl9saWZlY3ljbGUiKSB7CiAgICAgICAgICAgIHJldHVybiAi";
    encoded = encoded + "TElTVEVORVJfTElGRUNZQ0xFIjsKICAgICAgICB9CiAgICAgICAgaWYgKHRleHQgPT09ICJsb2FkX3JldmlzaW9uIikgewogICAgICAgICAgICByZXR1cm4gIk5PTkUiOwogICAgICAgIH0KICAgICAgICBpZiAodGV4dCA9PT0gIm5vbmUiIHx8IHRleHQgPT09ICIiKSB7CiAgICAgICAgICAgIHJldHVybiAiTk9ORSI7";
    encoded = encoded + "CiAgICAgICAgfQogICAgICAgIHJldHVybiAiRURJVF9ST0kiOwogICAgfQoKICAgIGZ1bmN0aW9uIHRlbGVtZXRyeUNvbnRleHQoaW1wLCBjb21tYW5kSWQsIHVzZUltYWdlUGx1c1JvaSkgewogICAgICAgIHZhciBjb250ZXh0ID0gbnVsbDsKICAgICAgICBpZiAoaW1wID09IG51bGwpIHsKICAgICAgICAgICAgcmV0";
    encoded = encoded + "dXJuIG51bGw7CiAgICAgICAgfQogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGNvbnRleHQgPSBjYXB0dXJlKAogICAgICAgICAgICAgICAgaW1wLCBjb21tYW5kSWQgPT0gbnVsbCA/ICJURUxFTUVUUlkiIDogU3RyaW5nKGNvbW1hbmRJZCksCiAgICAgICAgICAgICAgICB1c2VJbWFnZVBsdXNSb2kgPT09IHRydWUK";
    encoded = encoded + "ICAgICAgICAgICAgKTsKICAgICAgICB9IGNhdGNoIChpZ25vcmVkQ29udGV4dCkge30KICAgICAgICByZXR1cm4gY29udGV4dDsKICAgIH0KCiAgICBmdW5jdGlvbiB0ZWxlbWV0cnlDb25maWd1cmUoY2FtcGFpZ25JZCwgaW1wbGVtZW50YXRpb25Db21taXQpIHsKICAgICAgICB2YXIgY2FtcGFpZ24gPSBTdHJpbmco";
    encoded = encoded + "Y2FtcGFpZ25JZCA9PSBudWxsID8gIiIgOiBjYW1wYWlnbklkKTsKICAgICAgICB2YXIgY29tbWl0ID0gU3RyaW5nKGltcGxlbWVudGF0aW9uQ29tbWl0ID09IG51bGwgPyAiIiA6IGltcGxlbWVudGF0aW9uQ29tbWl0KTsKICAgICAgICBpZiAoIS9eWzAtOWEtZl17OH0tWzAtOWEtZl17NH0tNFswLTlhLWZdezN9LVs4";
    encoded = encoded + "OWFiXVswLTlhLWZdezN9LVswLTlhLWZdezEyfSQvLnRlc3QoY2FtcGFpZ24pKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiVEVMRU1FVFJZX0lOVkFMSURfQ0FNUEFJR05fSUQiKTsKICAgICAgICB9CiAgICAgICAgaWYgKCEvXlswLTlhLWZdezQwfSQvLnRlc3QoY29tbWl0KSkgewogICAgICAgICAgICB0";
    encoded = encoded + "aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9JTlZBTElEX0lNUExFTUVOVEFUSU9OX0NPTU1JVCIpOwogICAgICAgIH0KICAgICAgICBydW50aW1lU3RhdGVMb2NrLmxvY2tJbnRlcnJ1cHRpYmx5KCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgdGVsZW1ldHJ5TG9jay5sb2NrSW50ZXJydXB0aWJseSgpOwogICAg";
    encoded = encoded + "ICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgaWYgKHJ1bnRpbWVRdWV1ZURlcHRoICE9PSAwIHx8IHJ1bnRpbWVXcml0ZXJBY3RpdmVDb3VudCAhPT0gMCB8fAogICAgICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlRdWV1ZURlcHRoICE9PSAwIHx8IHRlbGVtZXRyeVdyaXRlckFjdGl2ZUNvdW50ICE9PSAw";
    encoded = encoded + "IHx8CiAgICAgICAgICAgICAgICAgICAgICAgIE9iamVjdC5rZXlzKHRlbGVtZXRyeVRyYW5zYWN0aW9ucykubGVuZ3RoICE9PSAwKSB7CiAgICAgICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJURUxFTUVUUllfQ09ORklHVVJFX0RVUklOR19BQ1RJVkVfT1BFUkFUSU9OIik7CiAgICAgICAgICAgICAgICB9";
    encoded = encoded + "CiAgICAgICAgICAgICAgICB0ZWxlbWV0cnlTdGF0ZSA9IHsKICAgICAgICAgICAgICAgICAgICBzY2hlbWE6IFRFTEVNRVRSWV9TQ0hFTUEsCiAgICAgICAgICAgICAgICAgICAgcnVudGltZV92ZXJzaW9uOiBWRVJTSU9OLAogICAgICAgICAgICAgICAgICAgIGNhbXBhaWduX2lkOiBjYW1wYWlnbiwKICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICBpbXBsZW1lbnRhdGlvbl9jb21taXQ6IGNvbW1pdCwKICAgICAgICAgICAgICAgICAgICBjYXBhY2l0eTogVEVMRU1FVFJZX0NBUEFDSVRZLAogICAgICAgICAgICAgICAgICAgIG92ZXJmbG93ZWQ6IGZhbHNlLAogICAgICAgICAgICAgICAgICAgIG5leHRfc2VxOiAxLAogICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgIGV2ZW50czogW10KICAgICAgICAgICAgICAgIH07CiAgICAgICAgICAgICAgICByZXR1cm4gSlNPTi5zdHJpbmdpZnkoewogICAgICAgICAgICAgICAgICAgIGNhbXBhaWduX2lkOiBjYW1wYWlnbiwKICAgICAgICAgICAgICAgICAgICBpbXBsZW1lbnRhdGlvbl9jb21taXQ6IGNvbW1pdCwKICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICBuZXh0X3NlcTogMSwKICAgICAgICAgICAgICAgICAgICBvdmVyZmxvd2VkOiBmYWxzZSwKICAgICAgICAgICAgICAgICAgICBzY2hlbWE6ICJDVExfUDFfUlVOVElNRV9URUxFTUVUUllfQ09ORklHVVJFRF9WMSIKICAgICAgICAgICAgICAgIH0pOwogICAgICAgICAgICB9IGZpbmFsbHkgewogICAgICAg";
    encoded = encoded + "ICAgICAgICAgdGVsZW1ldHJ5TG9jay51bmxvY2soKTsKICAgICAgICAgICAgfQogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIHRlbGVtZXRyeVJlY29yZChzcGVjaWZpY2F0aW9uKSB7CiAgICAgICAgdmFy";
    encoded = encoded + "IHNwZWMgPSBzcGVjaWZpY2F0aW9uIHx8IHt9OwogICAgICAgIHZhciBldmVudFR5cGU7CiAgICAgICAgdmFyIG93bmVyID0gc3BlYy5vd25lcl9jb250ZXh0IHx8IG51bGw7CiAgICAgICAgdmFyIHF1ZXVlU2xvdCA9IHNwZWMucXVldWVfc2xvdCB8fCBudWxsOwogICAgICAgIHZhciBpbXA7CiAgICAgICAgdmFyIGFj";
    encoded = encoded + "dGl2ZUltcDsKICAgICAgICB2YXIgbGl2ZTsKICAgICAgICB2YXIgYWN0aXZlOwogICAgICAgIHZhciByZXF1ZXN0SWQ7CiAgICAgICAgdmFyIHRyYW5zYWN0aW9uSWQ7CiAgICAgICAgdmFyIGV2ZW50OwogICAgICAgIHZhciBldmVudFF1ZXVlRGVwdGg7CiAgICAgICAgdmFyIGV2ZW50V3JpdGVyQWN0aXZlQ291bnQ7";
    encoded = encoded + "CiAgICAgICAgdmFyIHF1ZXVlVHJhbnNpdGlvbiA9ICJOT05FIjsKICAgICAgICB2YXIgZGVjcmVtZW50V3JpdGVyQWZ0ZXIgPSBmYWxzZTsKICAgICAgICB2YXIgY2xvc2VUcmFuc2FjdGlvbkFmdGVyID0gZmFsc2U7CiAgICAgICAgLy8gSW5zdHJ1bWVudGF0aW9uIGlzIGJlaGF2aW91cmFsbHkgaW5lcnQgdW50aWwg";
    encoded = encoded + "dGhlIGhhcm5lc3MgZXhwbGljaXRseQogICAgICAgIC8vIGNvbmZpZ3VyZXMgYSB2YWxpZCBjYW1wYWlnbiBiaW5kaW5nLiAgQWx3YXlzIGFjcXVpcmUgdGhlIHRlbGVtZXRyeQogICAgICAgIC8vIGxvY2sgYmVmb3JlIG9ic2VydmluZyB0aGF0IHN0YXRlOiB0aGlzIHN1cHBsaWVzIHRoZSBjcm9zcy10aHJlYWQKICAg";
    encoded = encoded + "ICAgICAvLyB2aXNpYmlsaXR5IGVkZ2UgZnJvbSB0ZWxlbWV0cnlDb25maWd1cmUgd2l0aG91dCB0b3VjaGluZyBJbWFnZUosCiAgICAgICAgLy8gY2FwdHVyaW5nIGNvbnRleHQsIG9yIHZhbGlkYXRpbmcgdGVsZW1ldHJ5LW9ubHkgaWRlbnRpZmllcnMgd2hpbGUKICAgICAgICAvLyB0aGUgZmVhdHVyZSBpcyBkaXNh";
    encoded = encoded + "YmxlZC4KICAgICAgICB0ZWxlbWV0cnlMb2NrLmxvY2tJbnRlcnJ1cHRpYmx5KCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgaWYgKHRlbGVtZXRyeVN0YXRlID09IG51bGwpIHsKICAgICAgICAgICAgICAgIHJldHVybiBudWxsOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGltcCA9IHNwZWMuaW1wIHx8IChv";
    encoded = encoded + "d25lciA9PSBudWxsID8gbnVsbCA6IG93bmVyLmltcCkgfHwgV00uZ2V0Q3VycmVudEltYWdlKCk7CiAgICAgICAgICAgIGFjdGl2ZUltcCA9IFdNLmdldEN1cnJlbnRJbWFnZSgpOwogICAgICAgICAgICBsaXZlID0gdGVsZW1ldHJ5Q29udGV4dChpbXAsIG93bmVyID09IG51bGwgPyBzcGVjLm9wZXJhdGlvbiA6IG93";
    encoded = encoded + "bmVyLmNvbW1hbmRfaWQsIHRydWUpOwogICAgICAgICAgICAvLyBUaGUgYWN0aXZlIHNpZGUgaXMgYW4gSW1hZ2VQbHVzL3dpbmRvdyBmYWN0LiAgSXQgbXVzdCBub3QgaW5oZXJpdAogICAgICAgICAgICAvLyBhIHN0YWxlIHByb2Nlc3MtZ2xvYmFsIFJvaU1hbmFnZXIgc2VsZWN0aW9uIG93bmVkIGJ5IGFub3RoZXIK";
    encoded = encoded + "ICAgICAgICAgICAgLy8gaW1hZ2UgYWZ0ZXIgYSB3aW5kb3cgc3dpdGNoLgogICAgICAgICAgICBhY3RpdmUgPSB0ZWxlbWV0cnlDb250ZXh0KAogICAgICAgICAgICAgICAgYWN0aXZlSW1wLCBvd25lciA9PSBudWxsID8gc3BlYy5vcGVyYXRpb24gOiBvd25lci5jb21tYW5kX2lkLCB0cnVlCiAgICAgICAgICAgICk7";
    encoded = encoded + "CiAgICAgICAgICAgIHJlcXVlc3RJZCA9IHRlbGVtZXRyeU51bGxhYmxlKHNwZWMucmVxdWVzdF9pZCk7CiAgICAgICAgICAgIHRyYW5zYWN0aW9uSWQgPSB0ZWxlbWV0cnlOdWxsYWJsZShzcGVjLnRyYW5zYWN0aW9uX2lkKTsKICAgICAgICAgICAgaWYgKHRlbGVtZXRyeVN0YXRlLm92ZXJmbG93ZWQgfHwgdGVsZW1l";
    encoded = encoded + "dHJ5U3RhdGUuZXZlbnRzLmxlbmd0aCA+PSB0ZWxlbWV0cnlTdGF0ZS5jYXBhY2l0eSkgewogICAgICAgICAgICAgICAgdGVsZW1ldHJ5U3RhdGUub3ZlcmZsb3dlZCA9IHRydWU7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9PVkVSRkxPV19GQUlMX0NMT1NFRCIpOwogICAgICAgICAg";
    encoded = encoded + "ICB9CiAgICAgICAgICAgIGV2ZW50VHlwZSA9IHRlbGVtZXRyeUVudW0oVEVMRU1FVFJZX0VWRU5UX1RZUEVTLCBzcGVjLmV2ZW50X3R5cGUsICIiLCAiRVZFTlRfVFlQRSIpOwogICAgICAgIGV2ZW50UXVldWVEZXB0aCA9IHRlbGVtZXRyeVF1ZXVlRGVwdGg7CiAgICAgICAgZXZlbnRXcml0ZXJBY3RpdmVDb3VudCA9";
    encoded = encoded + "IHRlbGVtZXRyeVdyaXRlckFjdGl2ZUNvdW50OwogICAgICAgIGlmIChldmVudFR5cGUgPT09ICJDT01NQU5EX0VOUVVFVUVEIikgewogICAgICAgICAgICBpZiAocXVldWVTbG90ID09IG51bGwgfHwgcXVldWVTbG90LnRlbGVtZXRyeV9wZW5kaW5nID09PSB0cnVlIHx8CiAgICAgICAgICAgICAgICAgICAgcXVldWVT";
    encoded = encoded + "bG90LnRlbGVtZXRyeV9zdGFydGVkID09PSB0cnVlIHx8CiAgICAgICAgICAgICAgICAgICAgcXVldWVTbG90LnRlbGVtZXRyeV9maW5pc2hlZCA9PT0gdHJ1ZSkgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJURUxFTUVUUllfUVVFVUVfU0xPVF9FTlFVRVVFX0lOVkFMSUQiKTsKICAgICAgICAgICAg";
    encoded = encoded + "fQogICAgICAgICAgICBldmVudFF1ZXVlRGVwdGggKz0gMTsKICAgICAgICAgICAgcXVldWVUcmFuc2l0aW9uID0gIkVOUVVFVUUiOwogICAgICAgIH0gZWxzZSBpZiAoZXZlbnRUeXBlID09PSAiQ09NTUFORF9TVEFSVEVEIikgewogICAgICAgICAgICBpZiAocXVldWVTbG90ID09IG51bGwgfHwgcXVldWVTbG90LnRl";
    encoded = encoded + "bGVtZXRyeV9wZW5kaW5nICE9PSB0cnVlIHx8CiAgICAgICAgICAgICAgICAgICAgcXVldWVTbG90LnRlbGVtZXRyeV9zdGFydGVkID09PSB0cnVlIHx8CiAgICAgICAgICAgICAgICAgICAgcXVldWVTbG90LnRlbGVtZXRyeV9maW5pc2hlZCA9PT0gdHJ1ZSkgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9y";
    encoded = encoded + "KCJURUxFTUVUUllfUVVFVUVfU0xPVF9TVEFSVF9JTlZBTElEIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKHRlbGVtZXRyeVF1ZXVlRGVwdGggPCAxKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9RVUVVRV9VTkRFUkZMT1ciKTsKICAgICAgICAgICAgfQogICAgICAg";
    encoded = encoded + "ICAgICBldmVudFF1ZXVlRGVwdGggLT0gMTsKICAgICAgICAgICAgZXZlbnRXcml0ZXJBY3RpdmVDb3VudCArPSAxOwogICAgICAgICAgICBpZiAoZXZlbnRXcml0ZXJBY3RpdmVDb3VudCA+IDEpIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiVEVMRU1FVFJZX1dSSVRFUl9DT05DVVJSRU5DWV9GQUlM";
    encoded = encoded + "X0NMT1NFRCIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIHF1ZXVlVHJhbnNpdGlvbiA9ICJTVEFSVCI7CiAgICAgICAgfSBlbHNlIGlmIChldmVudFR5cGUgPT09ICJDT01NQU5EX0ZJTklTSEVEIikgewogICAgICAgICAgICBpZiAocXVldWVTbG90ID09IG51bGwgfHwgcXVldWVTbG90LnRlbGVtZXRyeV9zdGFy";
    encoded = encoded + "dGVkICE9PSB0cnVlIHx8CiAgICAgICAgICAgICAgICAgICAgcXVldWVTbG90LnRlbGVtZXRyeV9maW5pc2hlZCA9PT0gdHJ1ZSB8fAogICAgICAgICAgICAgICAgICAgIHRlbGVtZXRyeVdyaXRlckFjdGl2ZUNvdW50ICE9PSAxKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9XUklU";
    encoded = encoded + "RVJfU1RBVEVfSU5WQUxJRCIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGRlY3JlbWVudFdyaXRlckFmdGVyID0gdHJ1ZTsKICAgICAgICAgICAgcXVldWVUcmFuc2l0aW9uID0gIkZJTklTSCI7CiAgICAgICAgfQogICAgICAgIGlmIChldmVudFR5cGUgPT09ICJUUkFOU0FDVElPTl9QSEFTRSIgJiYgdHJhbnNh";
    encoded = encoded + "Y3Rpb25JZCAhPSBudWxsICYmCiAgICAgICAgICAgICAgICBTdHJpbmcoc3BlYy5qb3VybmFsX3N0YXRlKSA9PT0gIlBSRVBBUkVEIikgewogICAgICAgICAgICB0ZWxlbWV0cnlUcmFuc2FjdGlvbnNbdHJhbnNhY3Rpb25JZF0gPSB0cnVlOwogICAgICAgIH0KICAgICAgICBpZiAoZXZlbnRUeXBlID09PSAiVFJBTlNB";
    encoded = encoded + "Q1RJT05fUEhBU0UiICYmIHRyYW5zYWN0aW9uSWQgIT0gbnVsbCAmJgogICAgICAgICAgICAgICAgKFN0cmluZyhzcGVjLmpvdXJuYWxfc3RhdGUpID09PSAiQ09NTUlUVEVEIiB8fAogICAgICAgICAgICAgICAgIFN0cmluZyhzcGVjLmpvdXJuYWxfc3RhdGUpID09PSAiUk9MTEVEX0JBQ0siIHx8CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgU3RyaW5nKHNwZWMuam91cm5hbF9zdGF0ZSkgPT09ICJGQUlMRURfUEFSVElBTCIpKSB7CiAgICAgICAgICAgIGlmICh0ZWxlbWV0cnlUcmFuc2FjdGlvbnNbdHJhbnNhY3Rpb25JZF0gIT09IHRydWUpIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiVEVMRU1FVFJZX1RSQU5TQUNUSU9OX0NM";
    encoded = encoded + "T1NFX1dJVEhPVVRfUFJFUEFSRSIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGNsb3NlVHJhbnNhY3Rpb25BZnRlciA9IHRydWU7CiAgICAgICAgfQogICAgICAgIGV2ZW50ID0gewogICAgICAgICAgICBzZXE6IHRlbGVtZXRyeVN0YXRlLm5leHRfc2VxLAogICAgICAgICAgICBlcG9jaF9tczogTnVtYmVyKFN5";
    encoded = encoded + "c3RlbS5jdXJyZW50VGltZU1pbGxpcygpKSwKICAgICAgICAgICAgbW9ub3RvbmljX25zOiBTdHJpbmcoTG9uZ0NsYXNzLnRvVW5zaWduZWRTdHJpbmcoU3lzdGVtLm5hbm9UaW1lKCkpKSwKICAgICAgICAgICAgY2FtcGFpZ25faWQ6IHRlbGVtZXRyeVN0YXRlLmNhbXBhaWduX2lkLAogICAgICAgICAgICBpbXBsZW1l";
    encoded = encoded + "bnRhdGlvbl9jb21taXQ6IHRlbGVtZXRyeVN0YXRlLmltcGxlbWVudGF0aW9uX2NvbW1pdCwKICAgICAgICAgICAgZXZlbnRfdHlwZTogZXZlbnRUeXBlLAogICAgICAgICAgICByZXF1ZXN0X2lkOiByZXF1ZXN0SWQsCiAgICAgICAgICAgIHRyYW5zYWN0aW9uX2lkOiB0cmFuc2FjdGlvbklkLAogICAgICAgICAgICBv";
    encoded = encoded + "cGVyYXRpb246IHRlbGVtZXRyeUVudW0oVEVMRU1FVFJZX09QRVJBVElPTlMsIHNwZWMub3BlcmF0aW9uLCAiTk9ORSIsICJPUEVSQVRJT04iKSwKICAgICAgICAgICAgcGhhc2U6IHRlbGVtZXRyeUVudW0oVEVMRU1FVFJZX1BIQVNFUywgc3BlYy5waGFzZSwgIk5PTkUiLCAiUEhBU0UiKSwKICAgICAgICAgICAgc3Rh";
    encoded = encoded + "dHVzOiB0ZWxlbWV0cnlFbnVtKFRFTEVNRVRSWV9TVEFUVVNFUywgc3BlYy5zdGF0dXMsICJOT05FIiwgIlNUQVRVUyIpLAogICAgICAgICAgICBvd25lcl9jb250ZXh0X3NoYTI1NjogdGVsZW1ldHJ5U2hhKAogICAgICAgICAgICAgICAgc3BlYy5vd25lcl9jb250ZXh0X3NoYTI1NiB8fCAob3duZXIgPT0gbnVsbCA/";
    encoded = encoded + "IG51bGwgOiBvd25lci5jb250ZXh0X2ZpbmdlcnByaW50X3NoYTI1NikKICAgICAgICAgICAgKSwKICAgICAgICAgICAgbGl2ZV9jb250ZXh0X3NoYTI1NjogdGVsZW1ldHJ5U2hhKAogICAgICAgICAgICAgICAgc3BlYy5saXZlX2NvbnRleHRfc2hhMjU2IHx8IChsaXZlID09IG51bGwgPyBudWxsIDogbGl2ZS5jb250";
    encoded = encoded + "ZXh0X2ZpbmdlcnByaW50X3NoYTI1NikKICAgICAgICAgICAgKSwKICAgICAgICAgICAgaW1hZ2VwbHVzX2lkOiB0ZWxlbWV0cnlOdWxsYWJsZSgKICAgICAgICAgICAgICAgIHNwZWMuaW1hZ2VwbHVzX2lkIHx8IChvd25lciA9PSBudWxsID8gbnVsbCA6IG93bmVyLmltYWdlcGx1c19pZGVudGl0eSkKICAgICAgICAg";
    encoded = encoded + "ICAgKSwKICAgICAgICAgICAgd2luZG93X2lkZW50aXR5OiB0ZWxlbWV0cnlOdWxsYWJsZSgKICAgICAgICAgICAgICAgIHNwZWMud2luZG93X2lkZW50aXR5IHx8IChvd25lciA9PSBudWxsID8gbnVsbCA6IG93bmVyLndpbmRvd19pZGVudGl0eSkKICAgICAgICAgICAgKSwKICAgICAgICAgICAgYWN0aXZlX2ltYWdl";
    encoded = encoded + "cGx1c19pZDogdGVsZW1ldHJ5TnVsbGFibGUoCiAgICAgICAgICAgICAgICBzcGVjLmFjdGl2ZV9pbWFnZXBsdXNfaWQgfHwgKGFjdGl2ZSA9PSBudWxsID8gbnVsbCA6IGFjdGl2ZS5pbWFnZXBsdXNfaWRlbnRpdHkpCiAgICAgICAgICAgICksCiAgICAgICAgICAgIGFjdGl2ZV93aW5kb3dfaWRlbnRpdHk6IHRlbGVt";
    encoded = encoded + "ZXRyeU51bGxhYmxlKAogICAgICAgICAgICAgICAgc3BlYy5hY3RpdmVfd2luZG93X2lkZW50aXR5IHx8IChhY3RpdmUgPT0gbnVsbCA/IG51bGwgOiBhY3RpdmUud2luZG93X2lkZW50aXR5KQogICAgICAgICAgICApLAogICAgICAgICAgICByb2lfdXVpZDogdGVsZW1ldHJ5TnVsbGFibGUoCiAgICAgICAgICAgICAg";
    encoded = encoded + "ICBzcGVjLnJvaV91dWlkIHx8IChvd25lciA9PSBudWxsID8gbnVsbCA6IG93bmVyLm9iamVjdF91dWlkKQogICAgICAgICAgICApLAogICAgICAgICAgICBhY3RpdmVfcm9pX3V1aWQ6IHRlbGVtZXRyeU51bGxhYmxlKAogICAgICAgICAgICAgICAgc3BlYy5hY3RpdmVfcm9pX3V1aWQgfHwgKGFjdGl2ZSA9PSBudWxs";
    encoded = encoded + "ID8gbnVsbCA6IGFjdGl2ZS5vYmplY3RfdXVpZCkKICAgICAgICAgICAgKSwKICAgICAgICAgICAgc2VsZWN0aW9uX3JldmlzaW9uOiB0ZWxlbWV0cnlOdWxsYWJsZSgKICAgICAgICAgICAgICAgIHNwZWMuc2VsZWN0aW9uX3JldmlzaW9uIHx8IChvd25lciA9PSBudWxsID8gbnVsbCA6IG93bmVyLnNlbGVjdGlvbl9y";
    encoded = encoded + "ZXZpc2lvbikKICAgICAgICAgICAgKSwKICAgICAgICAgICAgZ2VuZXJhdGlvbl90b2tlbjogdGVsZW1ldHJ5TnVsbGFibGUoCiAgICAgICAgICAgICAgICBzcGVjLmdlbmVyYXRpb25fdG9rZW4gfHwgKG93bmVyID09IG51bGwgPyBudWxsIDogb3duZXIuZ2VuZXJhdGlvbl90b2tlbikKICAgICAgICAgICAgKSwKICAg";
    encoded = encoded + "ICAgICAgICAgbGlzdGVuZXJfZ2VuZXJhdGlvbjogdGVsZW1ldHJ5TnVsbGFibGUoc3BlYy5saXN0ZW5lcl9nZW5lcmF0aW9uKSwKICAgICAgICAgICAgY2FsbGJhY2tfZGVjaXNpb246IHRlbGVtZXRyeUVudW0oCiAgICAgICAgICAgICAgICBURUxFTUVUUllfQ0FMTEJBQ0tfREVDSVNJT05TLCBzcGVjLmNhbGxiYWNr";
    encoded = encoded + "X2RlY2lzaW9uLAogICAgICAgICAgICAgICAgIk5PVF9BUFBMSUNBQkxFIiwgIkNBTExCQUNLX0RFQ0lTSU9OIgogICAgICAgICAgICApLAogICAgICAgICAgICBwdWJsaWNhdGlvbl9hdHRlbXB0ZWQ6IHNwZWMucHVibGljYXRpb25fYXR0ZW1wdGVkID09PSB0cnVlLAogICAgICAgICAgICBwdWJsaWNhdGlvbl90YXJn";
    encoded = encoded + "ZXRfY2xhc3M6IHRlbGVtZXRyeUVudW0oCiAgICAgICAgICAgICAgICBURUxFTUVUUllfUFVCTElDQVRJT05fVEFSR0VUUywgc3BlYy5wdWJsaWNhdGlvbl90YXJnZXRfY2xhc3MsCiAgICAgICAgICAgICAgICAiTk9ORSIsICJQVUJMSUNBVElPTl9UQVJHRVQiCiAgICAgICAgICAgICksCiAgICAgICAgICAgIHB1Ymxp";
    encoded = encoded + "Y2F0aW9uX3Jlc3VsdDogdGVsZW1ldHJ5RW51bSgKICAgICAgICAgICAgICAgIFRFTEVNRVRSWV9SRVNVTFRTLCBzcGVjLnB1YmxpY2F0aW9uX3Jlc3VsdCwKICAgICAgICAgICAgICAgICJOT1RfQVRURU1QVEVEIiwgIlBVQkxJQ0FUSU9OX1JFU1VMVCIKICAgICAgICAgICAgKSwKICAgICAgICAgICAgd3JpdGVfYXR0";
    encoded = encoded + "ZW1wdGVkOiBzcGVjLndyaXRlX2F0dGVtcHRlZCA9PT0gdHJ1ZSwKICAgICAgICAgICAgd3JpdGVfdGFyZ2V0X2NsYXNzOiB0ZWxlbWV0cnlFbnVtKAogICAgICAgICAgICAgICAgVEVMRU1FVFJZX1dSSVRFX1RBUkdFVFMsIHNwZWMud3JpdGVfdGFyZ2V0X2NsYXNzLAogICAgICAgICAgICAgICAgIk5PTkUiLCAiV1JJ";
    encoded = encoded + "VEVfVEFSR0VUIgogICAgICAgICAgICApLAogICAgICAgICAgICB3cml0ZV9yZXN1bHQ6IHRlbGVtZXRyeUVudW0oCiAgICAgICAgICAgICAgICBURUxFTUVUUllfUkVTVUxUUywgc3BlYy53cml0ZV9yZXN1bHQsCiAgICAgICAgICAgICAgICAiTk9UX0FUVEVNUFRFRCIsICJXUklURV9SRVNVTFQiCiAgICAgICAgICAg";
    encoded = encoded + "ICksCiAgICAgICAgICAgIGpvdXJuYWxfc3RhdGU6IHRlbGVtZXRyeUVudW0oCiAgICAgICAgICAgICAgICBURUxFTUVUUllfSk9VUk5BTF9TVEFURVMsIHNwZWMuam91cm5hbF9zdGF0ZSwKICAgICAgICAgICAgICAgICJOT1RfQVBQTElDQUJMRSIsICJKT1VSTkFMX1NUQVRFIgogICAgICAgICAgICApLAogICAgICAg";
    encoded = encoded + "ICAgICBxdWV1ZV9kZXB0aDogZXZlbnRRdWV1ZURlcHRoLAogICAgICAgICAgICB3cml0ZXJfYWN0aXZlX2NvdW50OiBldmVudFdyaXRlckFjdGl2ZUNvdW50LAogICAgICAgICAgICBkZXRhaWxfY29kZTogdGVsZW1ldHJ5RGV0YWlsKHNwZWMuZGV0YWlsX2NvZGUpCiAgICAgICAgfTsKICAgICAgICAvLyBDb21taXQg";
    encoded = encoded + "cXVldWUgYWNjb3VudGluZyBvbmx5IGFmdGVyIGV2ZXJ5IGVudW0vY29udGV4dCBmaWVsZCBoYXMgYmVlbgogICAgICAgIC8vIHZhbGlkYXRlZCBhbmQgdGhlIGNvbXBsZXRlIGltbXV0YWJsZSBldmVudCBpcyByZWFkeSB0byBhcHBlbmQuICBBCiAgICAgICAgLy8gdGVsZW1ldHJ5IGNvbnN0cnVjdGlvbiBlcnJvciB0";
    encoded = encoded + "aGVyZWZvcmUgY2Fubm90IGNvbnN1bWUgaGFsZiBhIHNsb3QuCiAgICAgICAgaWYgKHF1ZXVlVHJhbnNpdGlvbiA9PT0gIkVOUVVFVUUiKSB7CiAgICAgICAgICAgIHRlbGVtZXRyeVF1ZXVlRGVwdGggKz0gMTsKICAgICAgICAgICAgcXVldWVTbG90LnRlbGVtZXRyeV9wZW5kaW5nID0gdHJ1ZTsKICAgICAgICB9IGVs";
    encoded = encoded + "c2UgaWYgKHF1ZXVlVHJhbnNpdGlvbiA9PT0gIlNUQVJUIikgewogICAgICAgICAgICB0ZWxlbWV0cnlRdWV1ZURlcHRoIC09IDE7CiAgICAgICAgICAgIHRlbGVtZXRyeVdyaXRlckFjdGl2ZUNvdW50ICs9IDE7CiAgICAgICAgICAgIHF1ZXVlU2xvdC50ZWxlbWV0cnlfcGVuZGluZyA9IGZhbHNlOwogICAgICAgICAg";
    encoded = encoded + "ICBxdWV1ZVNsb3QudGVsZW1ldHJ5X3N0YXJ0ZWQgPSB0cnVlOwogICAgICAgIH0KICAgICAgICB0ZWxlbWV0cnlTdGF0ZS5ldmVudHMucHVzaChldmVudCk7CiAgICAgICAgdGVsZW1ldHJ5U3RhdGUubmV4dF9zZXEgKz0gMTsKICAgICAgICBpZiAoZGVjcmVtZW50V3JpdGVyQWZ0ZXIpIHsKICAgICAgICAgICAgdGVs";
    encoded = encoded + "ZW1ldHJ5V3JpdGVyQWN0aXZlQ291bnQgLT0gMTsKICAgICAgICAgICAgcXVldWVTbG90LnRlbGVtZXRyeV9zdGFydGVkID0gZmFsc2U7CiAgICAgICAgICAgIHF1ZXVlU2xvdC50ZWxlbWV0cnlfZmluaXNoZWQgPSB0cnVlOwogICAgICAgIH0KICAgICAgICBpZiAoY2xvc2VUcmFuc2FjdGlvbkFmdGVyKSB7CiAgICAg";
    encoded = encoded + "ICAgICAgIGRlbGV0ZSB0ZWxlbWV0cnlUcmFuc2FjdGlvbnNbdHJhbnNhY3Rpb25JZF07CiAgICAgICAgfQogICAgICAgICAgICByZXR1cm4gZXZlbnQuc2VxOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHRlbGVtZXRyeUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIHRl";
    encoded = encoded + "bGVtZXRyeVNuYXBzaG90KGNhbXBhaWduSWQsIGltcGxlbWVudGF0aW9uQ29tbWl0KSB7CiAgICAgICAgdmFyIGNhbXBhaWduID0gU3RyaW5nKGNhbXBhaWduSWQgPT0gbnVsbCA/ICIiIDogY2FtcGFpZ25JZCk7CiAgICAgICAgdmFyIGNvbW1pdCA9IFN0cmluZyhpbXBsZW1lbnRhdGlvbkNvbW1pdCA9PSBudWxsID8g";
    encoded = encoded + "IiIgOiBpbXBsZW1lbnRhdGlvbkNvbW1pdCk7CiAgICAgICAgdmFyIGk7CiAgICAgICAgdGVsZW1ldHJ5TG9jay5sb2NrSW50ZXJydXB0aWJseSgpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGlmICh0ZWxlbWV0cnlTdGF0ZSA9PSBudWxsIHx8IHRlbGVtZXRyeVN0YXRlLmNhbXBhaWduX2lkICE9PSBjYW1wYWln";
    encoded = encoded + "biB8fAogICAgICAgICAgICAgICAgICAgIHRlbGVtZXRyeVN0YXRlLmltcGxlbWVudGF0aW9uX2NvbW1pdCAhPT0gY29tbWl0KSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9TTkFQU0hPVF9CSU5ESU5HX01JU01BVENIIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKHRl";
    encoded = encoded + "bGVtZXRyeVN0YXRlLm92ZXJmbG93ZWQgfHwgdGVsZW1ldHJ5U3RhdGUuZXZlbnRzLmxlbmd0aCA+IHRlbGVtZXRyeVN0YXRlLmNhcGFjaXR5KSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9TTkFQU0hPVF9PVkVSRkxPV0VEIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgZm9y";
    encoded = encoded + "IChpID0gMDsgaSA8IHRlbGVtZXRyeVN0YXRlLmV2ZW50cy5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICAgICAgaWYgKHRlbGVtZXRyeVN0YXRlLmV2ZW50c1tpXS5zZXEgIT09IGkgKyAxKSB7CiAgICAgICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJURUxFTUVUUllfU0VRVUVOQ0VfTk9UX0NPTlRJ";
    encoded = encoded + "R1VPVVMiKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgfQogICAgICAgICAgICBpZiAodGVsZW1ldHJ5U3RhdGUubmV4dF9zZXEgIT09IHRlbGVtZXRyeVN0YXRlLmV2ZW50cy5sZW5ndGggKyAxKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9ORVhUX1NFUVVFTkNFX01J";
    encoded = encoded + "U01BVENIIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgcmV0dXJuIEpTT04uc3RyaW5naWZ5KEpTT04ucGFyc2UoSlNPTi5zdHJpbmdpZnkodGVsZW1ldHJ5U3RhdGUpKSk7CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgdGVsZW1ldHJ5TG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICB9CgogICAg";
    encoded = encoded + "ZnVuY3Rpb24gY3JlYXRlUXVldWVTbG90TG9ja2VkKHN0YXRlLCBvd25lciwgcmVxdWVzdElkKSB7CiAgICAgICAgdmFyIHNsb3Q7CiAgICAgICAgaWYgKHN0YXRlID09IG51bGwgfHwgc3RhdGUuY2xvc2VkID09PSB0cnVlKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUVVFVUVfU1RBVEVfQ0xPU0VEIik7";
    encoded = encoded + "CiAgICAgICAgfQogICAgICAgIHNsb3QgPSB7CiAgICAgICAgICAgIHJlcXVlc3RfaWQ6IFN0cmluZyhyZXF1ZXN0SWQpLAogICAgICAgICAgICBvd25lcjogb3duZXIgfHwgbnVsbCwKICAgICAgICAgICAgZnV0dXJlOiBudWxsLAogICAgICAgICAgICBhY2NlcHRlZDogZmFsc2UsCiAgICAgICAgICAgIHdvcmtlcl9l";
    encoded = encoded + "bnRlcmVkOiBmYWxzZSwKICAgICAgICAgICAgcnVudGltZV9wZW5kaW5nOiB0cnVlLAogICAgICAgICAgICB3cml0ZXJfYWN0aXZlOiBmYWxzZSwKICAgICAgICAgICAgdGVsZW1ldHJ5X3BlbmRpbmc6IGZhbHNlLAogICAgICAgICAgICB0ZWxlbWV0cnlfc3RhcnRlZDogZmFsc2UsCiAgICAgICAgICAgIHRlbGVtZXRy";
    encoded = encoded + "eV9maW5pc2hlZDogZmFsc2UsCiAgICAgICAgICAgIGNvbXBsZXRlZDogZmFsc2UsCiAgICAgICAgICAgIGNvbXBsZXRpb25fcmVhc29uOiBudWxsCiAgICAgICAgfTsKICAgICAgICBydW50aW1lUXVldWVEZXB0aCArPSAxOwogICAgICAgIHN0YXRlLnF1ZXVlU2xvdHMucHVzaChzbG90KTsKICAgICAgICByZXR1cm4g";
    encoded = encoded + "c2xvdDsKICAgIH0KCiAgICBmdW5jdGlvbiBtYXJrUXVldWVXb3JrZXJFbnRlcmVkKHN0YXRlLCBzbG90KSB7CiAgICAgICAgcnVudGltZVN0YXRlTG9jay5sb2NrKCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgaWYgKHN0YXRlID09IG51bGwgfHwgc2xvdCA9PSBudWxsIHx8IHNsb3QuY29tcGxldGVkID09PSB0";
    encoded = encoded + "cnVlKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlFVRVVFX1dPUktFUl9FTlRSWV9JTlZBTElEIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgc2xvdC53b3JrZXJfZW50ZXJlZCA9IHRydWU7CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2so";
    encoded = encoded + "KTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gYXdhaXRRdWV1ZU93bmVyc2hpcFRyYW5zZmVyKHN0YXRlLCBzbG90LCBnYXRlLCBvd25lcikgewogICAgICAgIG1hcmtRdWV1ZVdvcmtlckVudGVyZWQoc3RhdGUsIHNsb3QpOwogICAgICAgIGdhdGUuYXdhaXQoKTsKICAgICAgICBpZiAob3duZXIgIT0gbnVs";
    encoded = encoded + "bCAmJgogICAgICAgICAgICAgICAgKG93bmVyLnRyYW5zZmVycmVkICE9PSB0cnVlIHx8IG93bmVyLnN0YXR1cyAhPT0gIlBFTkRJTkciKSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlJPTExCQUNLX09XTkVSU0hJUF9UUkFOU0ZFUl9OT1RfQ09ORklSTUVEIik7CiAgICAgICAgfQogICAgfQoKICAgIGZ1";
    encoded = encoded + "bmN0aW9uIGJlZ2luUXVldWVTbG90V3JpdGVyKHN0YXRlLCBzbG90KSB7CiAgICAgICAgcnVudGltZVN0YXRlTG9jay5sb2NrKCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgaWYgKHN0YXRlID09IG51bGwgfHwgc3RhdGUuY2xvc2VkID09PSB0cnVlIHx8IHNsb3QgPT0gbnVsbCB8fAogICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgIHNsb3QuY29tcGxldGVkID09PSB0cnVlIHx8IHNsb3QucnVudGltZV9wZW5kaW5nICE9PSB0cnVlIHx8CiAgICAgICAgICAgICAgICAgICAgc2xvdC53cml0ZXJfYWN0aXZlID09PSB0cnVlKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlFVRVVFX1dSSVRFUl9TVEFSVF9JTlZBTElEIik7CiAg";
    encoded = encoded + "ICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKHJ1bnRpbWVRdWV1ZURlcHRoIDwgMSkgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJSVU5USU1FX1FVRVVFX1VOREVSRkxPVyIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIHJ1bnRpbWVRdWV1ZURlcHRoIC09IDE7CiAgICAgICAgICAgIHNsb3Qu";
    encoded = encoded + "cnVudGltZV9wZW5kaW5nID0gZmFsc2U7CiAgICAgICAgICAgIHJ1bnRpbWVXcml0ZXJBY3RpdmVDb3VudCArPSAxOwogICAgICAgICAgICBzbG90LndyaXRlcl9hY3RpdmUgPSB0cnVlOwogICAgICAgICAgICBpZiAocnVudGltZVdyaXRlckFjdGl2ZUNvdW50ICE9PSAxKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBu";
    encoded = encoded + "ZXcgRXJyb3IoIlJVTlRJTUVfV1JJVEVSX0NPTkNVUlJFTkNZX0ZBSUxfQ0xPU0VEIik7CiAgICAgICAgICAgIH0KICAgICAgICB9IGZpbmFsbHkgewogICAgICAgICAgICBydW50aW1lU3RhdGVMb2NrLnVubG9jaygpOwogICAgICAgIH0KICAgIH0KCiAgICBmdW5jdGlvbiBzZXR0bGVRdWV1ZVNsb3RBY2NvdW50aW5n";
    encoded = encoded + "KHN0YXRlLCBzbG90LCByZWFzb24pIHsKICAgICAgICB2YXIgaTsKICAgICAgICBpZiAoc3RhdGUgPT0gbnVsbCB8fCBzbG90ID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0KICAgICAgICAvLyBDbGVhbnVwIGlzIGRlbGliZXJhdGVseSBub24taW50ZXJydXB0aWJsZS4gIEVhY2gg";
    encoded = encoded + "dHJhbnNpdGlvbiBpcwogICAgICAgIC8vIGd1YXJkZWQgYnkgdGhlIHNsb3QgbGVkZ2VyIGFuZCB1c2VzIGFuIGV4YWN0IHVuZGVyZmxvdyBhc3NlcnRpb247CiAgICAgICAgLy8gcmVwZWF0ZWQgY2xlYW51cCBvYnNlcnZlcyBjb21wbGV0ZWQ9dHJ1ZSByYXRoZXIgdGhhbiBoaWRpbmcgYQogICAgICAgIC8vIGRvdWJs";
    encoded = encoded + "ZSB1bndpbmQgd2l0aCBhIG51bWVyaWMgY2xhbXAuCiAgICAgICAgcnVudGltZVN0YXRlTG9jay5sb2NrKCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgaWYgKHNsb3QuY29tcGxldGVkID09PSB0cnVlKSB7CiAgICAgICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYg";
    encoded = encoded + "KHNsb3QucnVudGltZV9wZW5kaW5nID09PSB0cnVlKSB7CiAgICAgICAgICAgICAgICBpZiAocnVudGltZVF1ZXVlRGVwdGggPCAxKSB7CiAgICAgICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJSVU5USU1FX1FVRVVFX1VOREVSRkxPV19PTl9TRVRUTEVNRU5UIik7CiAgICAgICAgICAgICAgICB9CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICBydW50aW1lUXVldWVEZXB0aCAtPSAxOwogICAgICAgICAgICAgICAgc2xvdC5ydW50aW1lX3BlbmRpbmcgPSBmYWxzZTsKICAgICAgICAgICAgfQogICAgICAgICAgICBpZiAoc2xvdC53cml0ZXJfYWN0aXZlID09PSB0cnVlKSB7CiAgICAgICAgICAgICAgICBpZiAocnVudGltZVdyaXRlckFjdGl2";
    encoded = encoded + "ZUNvdW50IDwgMSkgewogICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUlVOVElNRV9XUklURVJfVU5ERVJGTE9XX09OX1NFVFRMRU1FTlQiKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIHJ1bnRpbWVXcml0ZXJBY3RpdmVDb3VudCAtPSAxOwogICAgICAgICAgICAgICAgc2xvdC53";
    encoded = encoded + "cml0ZXJfYWN0aXZlID0gZmFsc2U7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgdGVsZW1ldHJ5TG9jay5sb2NrKCk7CiAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICBpZiAoc2xvdC50ZWxlbWV0cnlfcGVuZGluZyA9PT0gdHJ1ZSkgewogICAgICAgICAgICAgICAgICAgIGlmICh0ZWxlbWV0cnlRdWV1";
    encoded = encoded + "ZURlcHRoIDwgMSkgewogICAgICAgICAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlRFTEVNRVRSWV9RVUVVRV9VTkRFUkZMT1dfT05fU0VUVExFTUVOVCIpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlRdWV1ZURlcHRoIC09IDE7CiAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgc2xvdC50ZWxlbWV0cnlfcGVuZGluZyA9IGZhbHNlOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgaWYgKHNsb3QudGVsZW1ldHJ5X3N0YXJ0ZWQgPT09IHRydWUpIHsKICAgICAgICAgICAgICAgICAgICBpZiAodGVsZW1ldHJ5V3JpdGVyQWN0aXZlQ291bnQgPCAxKSB7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiVEVMRU1FVFJZX1dSSVRFUl9VTkRFUkZMT1dfT05fU0VUVExFTUVOVCIpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlXcml0ZXJBY3RpdmVDb3VudCAtPSAxOwogICAgICAgICAgICAgICAgICAgIHNsb3QudGVsZW1l";
    encoded = encoded + "dHJ5X3N0YXJ0ZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgICAgIHRlbGVtZXRyeUxvY2sudW5sb2NrKCk7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgc2xvdC5jb21wbGV0ZWQgPSB0cnVlOwogICAgICAgICAgICBzbG90LmNvbXBsZXRpb25f";
    encoded = encoded + "cmVhc29uID0gU3RyaW5nKHJlYXNvbik7CiAgICAgICAgICAgIGZvciAoaSA9IHN0YXRlLnF1ZXVlU2xvdHMubGVuZ3RoIC0gMTsgaSA+PSAwOyBpIC09IDEpIHsKICAgICAgICAgICAgICAgIGlmIChzdGF0ZS5xdWV1ZVNsb3RzW2ldID09PSBzbG90KSB7CiAgICAgICAgICAgICAgICAgICAgc3RhdGUucXVldWVTbG90";
    encoded = encoded + "cy5zcGxpY2UoaSwgMSk7CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgIH0KICAgICAgICAgICAgcmV0dXJuIHRydWU7CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gdGVsZW1ldHJ5QmxvY2tlZChp";
    encoded = encoded + "bXAsIG9wZXJhdGlvblZhbHVlLCBtYXN0ZXJTdGF0dXMpIHsKICAgICAgICB2YXIgb3BlcmF0aW9uID0gdGVsZW1ldHJ5T3BlcmF0aW9uKG9wZXJhdGlvblZhbHVlKTsKICAgICAgICB2YXIgc3RhdHVzID0gU3RyaW5nKG1hc3RlclN0YXR1cykgPT09ICJNSVNNQVRDSCIgPwogICAgICAgICAgICAiQkxPQ0tFRF9NSVNN";
    encoded = encoded + "QVRDSCIgOiAiQkxPQ0tFRF9OT1RfVkVSSUZJRUQiOwogICAgICAgIHZhciBwdWJsaWNhdGlvblRhcmdldCA9IG9wZXJhdGlvbiA9PT0gIlNBVkVfUkVWSVNJT04iID8gIlJFVklTSU9OIiA6CiAgICAgICAgICAgIChvcGVyYXRpb24gPT09ICJFWFBPUlRfUlVOIiA/ICJSVU4iIDogIk5PTkUiKTsKICAgICAgICB2YXIg";
    encoded = encoded + "d3JpdGVUYXJnZXQgPSBvcGVyYXRpb24gPT09ICJTQVZFX1JFVklTSU9OIiA/ICJSRVZJU0lPTl9TVEFHSU5HIiA6CiAgICAgICAgICAgIChvcGVyYXRpb24gPT09ICJFWFBPUlRfUlVOIiA/ICJSVU5fU1RBR0lORyIgOiAiUFJPSkVDVF9TQ0lFTkNFIik7CiAgICAgICAgcmV0dXJuIHRlbGVtZXRyeVJlY29yZCh7CiAg";
    encoded = encoded + "ICAgICAgICAgIGV2ZW50X3R5cGU6ICJDT01NQU5EX0JMT0NLRUQiLCBpbXA6IGltcCwgb3BlcmF0aW9uOiBvcGVyYXRpb24sCiAgICAgICAgICAgIHBoYXNlOiAiQ0FQVFVSRUQiLCBzdGF0dXM6IHN0YXR1cywKICAgICAgICAgICAgcHVibGljYXRpb25fYXR0ZW1wdGVkOiBmYWxzZSwgcHVibGljYXRpb25fdGFyZ2V0";
    encoded = encoded + "X2NsYXNzOiBwdWJsaWNhdGlvblRhcmdldCwKICAgICAgICAgICAgcHVibGljYXRpb25fcmVzdWx0OiBwdWJsaWNhdGlvblRhcmdldCA9PT0gIk5PTkUiID8gIk5PVF9BVFRFTVBURUQiIDogIkJMT0NLRUQiLAogICAgICAgICAgICB3cml0ZV9hdHRlbXB0ZWQ6IGZhbHNlLCB3cml0ZV90YXJnZXRfY2xhc3M6IHdyaXRl";
    encoded = encoded + "VGFyZ2V0LAogICAgICAgICAgICB3cml0ZV9yZXN1bHQ6IG9wZXJhdGlvbiA9PT0gIkVESVRfUk9JIiA/ICJCTE9DS0VEIiA6ICJOT1RfQVRURU1QVEVEIiwKICAgICAgICAgICAgZGV0YWlsX2NvZGU6IHN0YXR1cwogICAgICAgIH0pOwogICAgfQoKICAgIGZ1bmN0aW9uIHRlbGVtZXRyeUlkKCkgewogICAgICAgIHJl";
    encoded = encoded + "dHVybiBTdHJpbmcoVVVJRC5yYW5kb21VVUlEKCkpLnRvTG93ZXJDYXNlKCk7CiAgICB9CgogICAgZnVuY3Rpb24gdGVsZW1ldHJ5TWFzdGVyVmVyaWZpY2F0aW9uKGltcCwgc3RhdHVzLCBkZXRhaWxDb2RlKSB7CiAgICAgICAgdmFyIGFjdGl2ZVJlcXVlc3QgPSByZWdpc3RyeUdldChBQ1RJVkVfUkVRVUVTVF9LRVkp";
    encoded = encoded + "OwogICAgICAgIHZhciBhY3RpdmVUcmFuc2FjdGlvbiA9IHJlZ2lzdHJ5R2V0KEFDVElWRV9UUkFOU0FDVElPTl9LRVkpOwogICAgICAgIHZhciByZXF1ZXN0SWQgPSBhY3RpdmVSZXF1ZXN0ID09IG51bGwgPyBudWxsIDogU3RyaW5nKGFjdGl2ZVJlcXVlc3QpOwogICAgICAgIHZhciB0cmFuc2FjdGlvbklkID0gYWN0";
    encoded = encoded + "aXZlVHJhbnNhY3Rpb24gPT0gbnVsbCA/IG51bGwgOiBTdHJpbmcoYWN0aXZlVHJhbnNhY3Rpb24pOwogICAgICAgIGlmICgocmVxdWVzdElkID09IG51bGwpICE9PSAodHJhbnNhY3Rpb25JZCA9PSBudWxsKSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIkFDVElWRV9DT01NQU5EX0NPUlJFTEFUSU9OX0lO";
    encoded = encoded + "Q09NUExFVEUiKTsKICAgICAgICB9CiAgICAgICAgaWYgKHJlcXVlc3RJZCAhPSBudWxsICYmCiAgICAgICAgICAgICAgICAocmVxdWVzdElkID09PSB0cmFuc2FjdGlvbklkIHx8CiAgICAgICAgICAgICAgICAgIS9eWzAtOWEtZl17OH0tWzAtOWEtZl17NH0tNFswLTlhLWZdezN9LVs4OWFiXVswLTlhLWZdezN9LVsw";
    encoded = encoded + "LTlhLWZdezEyfSQvLnRlc3QoCiAgICAgICAgICAgICAgICAgICAgIHJlcXVlc3RJZAogICAgICAgICAgICAgICAgICkgfHwKICAgICAgICAgICAgICAgICAhL15bMC05YS1mXXs4fS1bMC05YS1mXXs0fS00WzAtOWEtZl17M30tWzg5YWJdWzAtOWEtZl17M30tWzAtOWEtZl17MTJ9JC8udGVzdCgKICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgdHJhbnNhY3Rpb25JZAogICAgICAgICAgICAgICAgICkpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQUNUSVZFX0NPTU1BTkRfQ09SUkVMQVRJT05fSU5WQUxJRCIpOwogICAgICAgIH0KICAgICAgICByZXR1cm4gdGVsZW1ldHJ5UmVjb3JkKHsKICAgICAgICAgICAgZXZlbnRfdHlwZTog";
    encoded = encoded + "Ik1BU1RFUl9WRVJJRlkiLCBpbXA6IGltcCwgb3BlcmF0aW9uOiAiVkVSSUZZX01BU1RFUiIsCiAgICAgICAgICAgIHJlcXVlc3RfaWQ6IHJlcXVlc3RJZCwgdHJhbnNhY3Rpb25faWQ6IHRyYW5zYWN0aW9uSWQsCiAgICAgICAgICAgIHBoYXNlOiAiQ09NUExFVEUiLCBzdGF0dXM6IHN0YXR1cywKICAgICAgICAgICAg";
    encoded = encoded + "cHVibGljYXRpb25fYXR0ZW1wdGVkOiBmYWxzZSwgcHVibGljYXRpb25fdGFyZ2V0X2NsYXNzOiAiTk9ORSIsCiAgICAgICAgICAgIHB1YmxpY2F0aW9uX3Jlc3VsdDogIk5PVF9BVFRFTVBURUQiLCB3cml0ZV9hdHRlbXB0ZWQ6IGZhbHNlLAogICAgICAgICAgICB3cml0ZV90YXJnZXRfY2xhc3M6ICJOT05FIiwgd3Jp";
    encoded = encoded + "dGVfcmVzdWx0OiAiTk9UX0FUVEVNUFRFRCIsCiAgICAgICAgICAgIGRldGFpbF9jb2RlOiBkZXRhaWxDb2RlCiAgICAgICAgfSk7CiAgICB9CgogICAgZnVuY3Rpb24gdGVsZW1ldHJ5TGlzdGVuZXJDYWxsYmFjaygKICAgICAgICAgICAgaW1wLCBzdGF0ZSwgZ2VuZXJhdGlvbiwgb3BlcmF0aW9uLCBkZXRhaWxDb2Rl";
    encoded = encoded + "LAogICAgICAgICAgICBvd25lckNvbnRleHQsIHJlcXVlc3RJZCwgdHJhbnNhY3Rpb25JZCwgYWNjZXB0Rm9jdXNDaGFuZ2UpIHsKICAgICAgICB2YXIgY3VycmVudEdlbmVyYXRpb24gPSBpbWFnZVByb3BlcnR5KGltcCwgIkNUTC5QMS5nZW5lcmF0aW9uX3Rva2VuIiwgIjAiKTsKICAgICAgICB2YXIgZGVjaXNpb24g";
    encoded = encoded + "PSAiQUNDRVBURUQiOwogICAgICAgIHZhciBzdGF0dXMgPSAiQUNDRVBURUQiOwogICAgICAgIGlmIChzdGF0ZSA9PSBudWxsIHx8IHN0YXRlLmNsb3NlZCB8fCBTdHJpbmcoZ2VuZXJhdGlvbikgIT09IGN1cnJlbnRHZW5lcmF0aW9uKSB7CiAgICAgICAgICAgIGRlY2lzaW9uID0gIlJFSkVDVEVEX0dFTkVSQVRJT04i";
    encoded = encoded + "OwogICAgICAgICAgICBzdGF0dXMgPSAiUkVKRUNURURfR0VORVJBVElPTiI7CiAgICAgICAgfSBlbHNlIGlmIChhY2NlcHRGb2N1c0NoYW5nZSAhPT0gdHJ1ZSAmJiBpbXAgIT09IFdNLmdldEN1cnJlbnRJbWFnZSgpKSB7CiAgICAgICAgICAgIGRlY2lzaW9uID0gIlJFSkVDVEVEX1NUQUxFX0NPTlRFWFQiOwogICAg";
    encoded = encoded + "ICAgICAgICBzdGF0dXMgPSAiUkVKRUNURURfU1RBTEUiOwogICAgICAgIH0KICAgICAgICB0ZWxlbWV0cnlSZWNvcmQoewogICAgICAgICAgICBldmVudF90eXBlOiAiQ0FMTEJBQ0tfRElTUEFUQ0giLCBpbXA6IGltcCwKICAgICAgICAgICAgb3duZXJfY29udGV4dDogb3duZXJDb250ZXh0IHx8IG51bGwsCiAgICAg";
    encoded = encoded + "ICAgICAgIHJlcXVlc3RfaWQ6IHJlcXVlc3RJZCB8fCBudWxsLCB0cmFuc2FjdGlvbl9pZDogdHJhbnNhY3Rpb25JZCB8fCBudWxsLAogICAgICAgICAgICBvcGVyYXRpb246IHRlbGVtZXRyeU9wZXJhdGlvbihvcGVyYXRpb24pLCBwaGFzZTogIkRJU1BBVENIRUQiLCBzdGF0dXM6IHN0YXR1cywKICAgICAgICAgICAg";
    encoded = encoded + "bGlzdGVuZXJfZ2VuZXJhdGlvbjogU3RyaW5nKGdlbmVyYXRpb24pLCBjYWxsYmFja19kZWNpc2lvbjogZGVjaXNpb24sCiAgICAgICAgICAgIGRldGFpbF9jb2RlOiBkZXRhaWxDb2RlCiAgICAgICAgfSk7CiAgICAgICAgcmV0dXJuIGRlY2lzaW9uID09PSAiQUNDRVBURUQiOwogICAgfQoKICAgIGZ1bmN0aW9uIGtl";
    encoded = encoded + "eUNvbW1hbmRTcGVjKGV2ZW50KSB7CiAgICAgICAgdmFyIGNvbnRyb2w7CiAgICAgICAgdmFyIHNoaWZ0OwogICAgICAgIHZhciBhbHQ7CiAgICAgICAgdmFyIGNvZGU7CiAgICAgICAgaWYgKGV2ZW50ID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuIG51bGw7CiAgICAgICAgfQogICAgICAgIGNvbnRyb2wgPSBl";
    encoded = encoded + "dmVudC5pc0NvbnRyb2xEb3duKCkgfHwgZXZlbnQuaXNNZXRhRG93bigpOwogICAgICAgIHNoaWZ0ID0gZXZlbnQuaXNTaGlmdERvd24oKTsKICAgICAgICBhbHQgPSBldmVudC5pc0FsdERvd24oKTsKICAgICAgICBjb2RlID0gZXZlbnQuZ2V0S2V5Q29kZSgpOwogICAgICAgIGlmICghY29udHJvbCB8fCBhbHQpIHsK";
    encoded = encoded + "ICAgICAgICAgICAgcmV0dXJuIG51bGw7CiAgICAgICAgfQogICAgICAgIGlmIChzaGlmdCAmJiBjb2RlID09PSBLZXlFdmVudC5WS19WKSB7CiAgICAgICAgICAgIHJldHVybiB7CiAgICAgICAgICAgICAgICBjb21tYW5kOiAiQ2F2aXR5IExpZ2h0OiB2YWxpZGFyIGltYWdlbiIsCiAgICAgICAgICAgICAgICBvcGVy";
    encoded = encoded + "YXRpb246ICJWRVJJRllfTUFTVEVSIiwKICAgICAgICAgICAgICAgIGRldGFpbF9jb2RlOiAiS0VZX1BSRVNTRURfVkVSSUZZX01BU1RFUiIKICAgICAgICAgICAgfTsKICAgICAgICB9CiAgICAgICAgaWYgKHNoaWZ0ICYmIGNvZGUgPT09IEtleUV2ZW50LlZLX0UpIHsKICAgICAgICAgICAgcmV0dXJuIHsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgIGNvbW1hbmQ6ICJDYXZpdHkgTGlnaHQ6IGNhbGN1bGFyIHkgZXhwb3J0YXIgcmVzdWx0YWRvcyIsCiAgICAgICAgICAgICAgICBvcGVyYXRpb246ICJFWFBPUlRfUlVOIiwKICAgICAgICAgICAgICAgIGRldGFpbF9jb2RlOiAiS0VZX1BSRVNTRURfRVhQT1JUX1JVTiIKICAgICAgICAgICAgfTsKICAg";
    encoded = encoded + "ICAgICB9CiAgICAgICAgaWYgKCFzaGlmdCAmJiBjb2RlID09PSBLZXlFdmVudC5WS19TKSB7CiAgICAgICAgICAgIHJldHVybiB7CiAgICAgICAgICAgICAgICBjb21tYW5kOiAiQ2F2aXR5IExpZ2h0OiBndWFyZGFyIG51ZXZhIHJldmlzaW9uIiwKICAgICAgICAgICAgICAgIG9wZXJhdGlvbjogIlNBVkVfUkVWSVNJ";
    encoded = encoded + "T04iLAogICAgICAgICAgICAgICAgZGV0YWlsX2NvZGU6ICJLRVlfUFJFU1NFRF9TQVZFX1JFVklTSU9OIgogICAgICAgICAgICB9OwogICAgICAgIH0KICAgICAgICByZXR1cm4gbnVsbDsKICAgIH0KCiAgICBmdW5jdGlvbiBkaXNwYXRjaEtleUNvbW1hbmQoaW1wLCBzdGF0ZSwgbGlzdGVuZXJHZW5lcmF0aW9uLCBl";
    encoded = encoded + "dmVudCkgewogICAgICAgIHZhciBzcGVjaWZpY2F0aW9uID0ga2V5Q29tbWFuZFNwZWMoZXZlbnQpOwogICAgICAgIHZhciBvd25lclNuYXBzaG90OwogICAgICAgIHZhciByZXF1ZXN0SWQ7CiAgICAgICAgdmFyIHRyYW5zYWN0aW9uSWQ7CiAgICAgICAgdmFyIGNvcnJlbGF0aW9uOwogICAgICAgIGlmIChzcGVjaWZp";
    encoded = encoded + "Y2F0aW9uID09IG51bGwpIHsKICAgICAgICAgICAgLy8gVW5yZWNvZ25pc2VkIGtleXMgYXJlIG5vdCBwcm9kdWN0IGNhbGxiYWNrcyBhbmQgbXVzdCBub3QgYWRkIGEKICAgICAgICAgICAgLy8gZ2VuZXJpYy9uZXV0cmFsIHJlY29yZCB0byB0aGUgY2FtcGFpZ24gcmluZy4KICAgICAgICAgICAgcmV0dXJuIGZhbHNl";
    encoded = encoded + "OwogICAgICAgIH0KICAgICAgICB0cnkgewogICAgICAgICAgICAvLyBDYXB0dXJlIGFuZCBhbGxvY2F0ZSB0aGUgY29tcGxldGUgb3V0ZXIgY2F1c2FsIGlkZW50aXR5IGJlZm9yZQogICAgICAgICAgICAvLyBDQUxMQkFDS19ESVNQQVRDSC4gIHN1Ym1pdCgpIHJlY2VpdmVzIHRoaXMgZXhhY3QgaWRlbnRpdHksIHdo";
    encoded = encoded + "aWxlCiAgICAgICAgICAgIC8vIHRoZSBtYWNybydzIG5lc3RlZCBwcm9kdWN0IGNvbW1hbmQgYWxsb2NhdGVzIGl0cyBvd24gaW5uZXIgcGFpci4KICAgICAgICAgICAgb3duZXJTbmFwc2hvdCA9IGNhcHR1cmUoaW1wLCAiS0VZX0NPTU1BTkQiKTsKICAgICAgICAgICAgcmVxdWVzdElkID0gdGVsZW1ldHJ5SWQoKTsK";
    encoded = encoded + "ICAgICAgICAgICAgZG8gewogICAgICAgICAgICAgICAgdHJhbnNhY3Rpb25JZCA9IHRlbGVtZXRyeUlkKCk7CiAgICAgICAgICAgIH0gd2hpbGUgKHRyYW5zYWN0aW9uSWQgPT09IHJlcXVlc3RJZCk7CiAgICAgICAgICAgIGNvcnJlbGF0aW9uID0gewogICAgICAgICAgICAgICAgcmVxdWVzdF9pZDogcmVxdWVzdElk";
    encoded = encoded + "LAogICAgICAgICAgICAgICAgdHJhbnNhY3Rpb25faWQ6IHRyYW5zYWN0aW9uSWQsCiAgICAgICAgICAgICAgICBsaXN0ZW5lcl9nZW5lcmF0aW9uOiBTdHJpbmcobGlzdGVuZXJHZW5lcmF0aW9uKQogICAgICAgICAgICB9OwogICAgICAgICAgICBpZiAodGVsZW1ldHJ5TGlzdGVuZXJDYWxsYmFjaygKICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICBpbXAsIHN0YXRlLCBsaXN0ZW5lckdlbmVyYXRpb24sIHNwZWNpZmljYXRpb24ub3BlcmF0aW9uLAogICAgICAgICAgICAgICAgICAgIHNwZWNpZmljYXRpb24uZGV0YWlsX2NvZGUsIG93bmVyU25hcHNob3QsIHJlcXVlc3RJZCwKICAgICAgICAgICAgICAgICAgICB0cmFuc2FjdGlvbklkLCBmYWxz";
    encoded = encoded + "ZSkpIHsKICAgICAgICAgICAgICAgIHN1Ym1pdCgKICAgICAgICAgICAgICAgICAgICBvd25lclNuYXBzaG90LCAiS0VZX0NPTU1BTkQiLCBzcGVjaWZpY2F0aW9uLmNvbW1hbmQsCiAgICAgICAgICAgICAgICAgICAgZmFsc2UsIG51bGwsIGNvcnJlbGF0aW9uCiAgICAgICAgICAgICAgICApOwogICAgICAgICAgICB9";
    encoded = encoded + "CiAgICAgICAgfSBjYXRjaCAoa2V5RGlzcGF0Y2hFcnJvcikgewogICAgICAgICAgICBJSi5sb2coIkNUTCBQMSBrZXkgY29tbWFuZCByZWplY3RlZDogIiArIGtleURpc3BhdGNoRXJyb3IpOwogICAgICAgIH0KICAgICAgICBldmVudC5jb25zdW1lKCk7CiAgICAgICAgcmV0dXJuIHRydWU7CiAgICB9CgogICAgZnVu";
    encoded = encoded + "Y3Rpb24gdXVpZDVDdGwobmFtZSkgewogICAgICAgIHZhciBuYW1lc3BhY2VIZXggPSBJREVOVElUWV9OQU1FU1BBQ0VfVVVJRC5yZXBsYWNlKC8tL2csICIiKTsKICAgICAgICB2YXIgbmFtZXNwYWNlQnl0ZXMgPSBieXRlQXJyYXkoMTYpOwogICAgICAgIHZhciBkaWdlc3QgPSBNZXNzYWdlRGlnZXN0LmdldEluc3Rh";
    encoded = encoded + "bmNlKCJTSEEtMSIpOwogICAgICAgIHZhciByZXN1bHQ7CiAgICAgICAgdmFyIHRleHQgPSAiIjsKICAgICAgICB2YXIgaTsKICAgICAgICB2YXIgdmFsdWU7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IDE2OyBpICs9IDEpIHsKICAgICAgICAgICAgc2V0VW5zaWduZWRCeXRlKG5hbWVzcGFjZUJ5dGVzLCBpLCBwYXJz";
    encoded = encoded + "ZUludChuYW1lc3BhY2VIZXguc3Vic3RyaW5nKGkgKiAyLCBpICogMiArIDIpLCAxNikpOwogICAgICAgIH0KICAgICAgICBkaWdlc3QudXBkYXRlKG5hbWVzcGFjZUJ5dGVzKTsKICAgICAgICBkaWdlc3QudXBkYXRlKG5ldyBqYXZhLmxhbmcuU3RyaW5nKFN0cmluZyhuYW1lKSkuZ2V0Qnl0ZXMoU3RhbmRhcmRDaGFy";
    encoded = encoded + "c2V0cy5VVEZfOCkpOwogICAgICAgIHJlc3VsdCA9IGRpZ2VzdC5kaWdlc3QoKTsKICAgICAgICBzZXRVbnNpZ25lZEJ5dGUocmVzdWx0LCA2LCAodW5zaWduZWRCeXRlKHJlc3VsdFs2XSkgJiAxNSkgfCA4MCk7CiAgICAgICAgc2V0VW5zaWduZWRCeXRlKHJlc3VsdCwgOCwgKHVuc2lnbmVkQnl0ZShyZXN1bHRbOF0p";
    encoded = encoded + "ICYgNjMpIHwgMTI4KTsKICAgICAgICBmb3IgKGkgPSAwOyBpIDwgMTY7IGkgKz0gMSkgewogICAgICAgICAgICBpZiAoaSA9PT0gNCB8fCBpID09PSA2IHx8IGkgPT09IDggfHwgaSA9PT0gMTApIHsKICAgICAgICAgICAgICAgIHRleHQgKz0gIi0iOwogICAgICAgICAgICB9CiAgICAgICAgICAgIHZhbHVlID0gdW5z";
    encoded = encoded + "aWduZWRCeXRlKHJlc3VsdFtpXSk7CiAgICAgICAgICAgIGlmICh2YWx1ZSA8IDE2KSB7CiAgICAgICAgICAgICAgICB0ZXh0ICs9ICIwIjsKICAgICAgICAgICAgfQogICAgICAgICAgICB0ZXh0ICs9IHZhbHVlLnRvU3RyaW5nKDE2KTsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIHRleHQ7CiAgICB9CgogICAgZnVu";
    encoded = encoded + "Y3Rpb24gcmVnaXN0cnlSb3dzRXhhY3QoYnl0ZXMpIHsKICAgICAgICB2YXIgcm93cyA9IFtdOwogICAgICAgIHZhciBzdGFydCA9IDA7CiAgICAgICAgdmFyIGk7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IGJ5dGVzLmxlbmd0aDsgaSArPSAxKSB7CiAgICAgICAgICAgIGlmICh1bnNpZ25lZEJ5dGUoYnl0ZXNbaV0p";
    encoded = encoded + "ID09PSAxMCkgewogICAgICAgICAgICAgICAgcm93cy5wdXNoKGNvcHlCeXRlUmFuZ2UoYnl0ZXMsIHN0YXJ0LCBpICsgMSAtIHN0YXJ0KSk7CiAgICAgICAgICAgICAgICBzdGFydCA9IGkgKyAxOwogICAgICAgICAgICB9CiAgICAgICAgfQogICAgICAgIGlmIChzdGFydCA8IGJ5dGVzLmxlbmd0aCkgewogICAgICAg";
    encoded = encoded + "ICAgICByb3dzLnB1c2goY29weUJ5dGVSYW5nZShieXRlcywgc3RhcnQsIGJ5dGVzLmxlbmd0aCAtIHN0YXJ0KSk7CiAgICAgICAgfQogICAgICAgIHJldHVybiByb3dzOwogICAgfQoKICAgIGZ1bmN0aW9uIHJvd0NvbnRlbnRMZW5ndGgocm93KSB7CiAgICAgICAgdmFyIGxlbmd0aCA9IHJvdy5sZW5ndGg7CiAgICAg";
    encoded = encoded + "ICAgdmFyIGk7CiAgICAgICAgaWYgKGxlbmd0aCA+IDAgJiYgdW5zaWduZWRCeXRlKHJvd1tsZW5ndGggLSAxXSkgPT09IDEwKSB7CiAgICAgICAgICAgIGxlbmd0aCAtPSAxOwogICAgICAgICAgICBpZiAobGVuZ3RoID4gMCAmJiB1bnNpZ25lZEJ5dGUocm93W2xlbmd0aCAtIDFdKSA9PT0gMTMpIHsKICAgICAgICAg";
    encoded = encoded + "ICAgICAgIGxlbmd0aCAtPSAxOwogICAgICAgICAgICB9CiAgICAgICAgfQogICAgICAgIGZvciAoaSA9IDA7IGkgPCBsZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICBpZiAodW5zaWduZWRCeXRlKHJvd1tpXSkgPT09IDEwIHx8IHVuc2lnbmVkQnl0ZShyb3dbaV0pID09PSAxMykgewogICAgICAgICAgICAgICAg";
    encoded = encoded + "dGhyb3cgbmV3IEVycm9yKCJCTE9DS0VEX1JFVklFVzogaW1hZ2VzLnRzdiBjb250YWlucyBhIG5vbi1jYW5vbmljYWwgcm93IHRlcm1pbmF0b3IiKTsKICAgICAgICAgICAgfQogICAgICAgIH0KICAgICAgICByZXR1cm4gbGVuZ3RoOwogICAgfQoKICAgIGZ1bmN0aW9uIHJvd0ZpcnN0Q2VsbE1hdGNoZXMocm93LCBj";
    encoded = encoded + "b250ZW50TGVuZ3RoLCBpbWFnZUlkQnl0ZXMpIHsKICAgICAgICB2YXIgdGFiID0gLTE7CiAgICAgICAgdmFyIGk7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IGNvbnRlbnRMZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICBpZiAodW5zaWduZWRCeXRlKHJvd1tpXSkgPT09IDkpIHsKICAgICAgICAgICAgICAgIHRh";
    encoded = encoded + "YiA9IGk7CiAgICAgICAgICAgICAgICBicmVhazsKICAgICAgICAgICAgfQogICAgICAgIH0KICAgICAgICByZXR1cm4gdGFiID49IDAgJiYgc2FtZUJ5dGVSYW5nZShyb3csIDAsIHRhYiwgaW1hZ2VJZEJ5dGVzKTsKICAgIH0KCiAgICBmdW5jdGlvbiBsZWdhY3lSZWdpc3RyeUV2aWRlbmNlKHByb2plY3RSb290LCBp";
    encoded = encoded + "bWFnZUlkKSB7CiAgICAgICAgdmFyIHJvb3QgPSBuZXcgRmlsZShTdHJpbmcocHJvamVjdFJvb3QpKS5nZXRDYW5vbmljYWxGaWxlKCk7CiAgICAgICAgdmFyIGxleGljYWxSZWdpc3RyeSA9IG5ldyBGaWxlKHJvb3QsIExFR0FDWV9SRUdJU1RSWV9SRUxBVElWRV9QQVRIKTsKICAgICAgICB2YXIgcmVnaXN0cnk7CiAg";
    encoded = encoded + "ICAgICAgdmFyIGJ5dGVzOwogICAgICAgIHZhciByb3dzOwogICAgICAgIHZhciBoZWFkZXJCeXRlcyA9IGFzY2lpQnl0ZXMoTEVHQUNZX1JFR0lTVFJZX0hFQURFUik7CiAgICAgICAgdmFyIGltYWdlSWRCeXRlcyA9IGFzY2lpQnl0ZXModmFsaWRhdGVIdW1hbklkKGltYWdlSWQsICJpbWFnZV9pZCIpKTsKICAgICAg";
    encoded = encoded + "ICB2YXIgc2VsZWN0ZWQgPSBudWxsOwogICAgICAgIHZhciBzZWxlY3RlZE9yZGluYWwgPSAwOwogICAgICAgIHZhciBjb250ZW50TGVuZ3RoOwogICAgICAgIHZhciB0YWJDb3VudDsKICAgICAgICB2YXIgaTsKICAgICAgICB2YXIgajsKICAgICAgICBpZiAoIXJvb3QuaXNEaXJlY3RvcnkoKSB8fCBGaWxlcy5pc1N5";
    encoded = encoded + "bWJvbGljTGluayhyb290LnRvUGF0aCgpKSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIkJMT0NLRURfUkVWSUVXOiBwcm9qZWN0IHJvb3QgaXMgbm90IGEgcGxhaW4gZGlyZWN0b3J5Iik7CiAgICAgICAgfQogICAgICAgIGlmICghbGV4aWNhbFJlZ2lzdHJ5LmlzRmlsZSgpIHx8IEZpbGVzLmlzU3ltYm9s";
    encoded = encoded + "aWNMaW5rKGxleGljYWxSZWdpc3RyeS50b1BhdGgoKSkpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJCTE9DS0VEX1JFVklFVzogaW1hZ2VzLnRzdiBpcyBtaXNzaW5nIG9yIGxpbmtlZCIpOwogICAgICAgIH0KICAgICAgICByZWdpc3RyeSA9IGxleGljYWxSZWdpc3RyeS5nZXRDYW5vbmljYWxGaWxlKCk7";
    encoded = encoded + "CiAgICAgICAgaWYgKFN0cmluZyhyZWdpc3RyeS5nZXRQYXJlbnRGaWxlKCkuZ2V0Q2Fub25pY2FsUGF0aCgpKSAhPT0gU3RyaW5nKHJvb3QuZ2V0Q2Fub25pY2FsUGF0aCgpKSB8fAogICAgICAgICAgICAgICAgU3RyaW5nKHJlZ2lzdHJ5LmdldE5hbWUoKSkgIT09IExFR0FDWV9SRUdJU1RSWV9SRUxBVElWRV9QQVRI";
    encoded = encoded + "KSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQkxPQ0tFRF9SRVZJRVc6IGltYWdlcy50c3YgaXMgbm90IHRoZSBjYW5vbmljYWwgZGlyZWN0IGNoaWxkIik7CiAgICAgICAgfQogICAgICAgIGJ5dGVzID0gRmlsZXMucmVhZEFsbEJ5dGVzKHJlZ2lzdHJ5LnRvUGF0aCgpKTsKICAgICAgICByb3dzID0gcmVn";
    encoded = encoded + "aXN0cnlSb3dzRXhhY3QoYnl0ZXMpOwogICAgICAgIGlmIChyb3dzLmxlbmd0aCA8IDIgfHwgIXNhbWVCeXRlUmFuZ2Uocm93c1swXSwgMCwgcm93Q29udGVudExlbmd0aChyb3dzWzBdKSwgaGVhZGVyQnl0ZXMpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQkxPQ0tFRF9SRVZJRVc6IGltYWdlcy50c3Yg";
    encoded = encoded + "aGVhZGVyIG1pc21hdGNoIik7CiAgICAgICAgfQogICAgICAgIGZvciAoaSA9IDE7IGkgPCByb3dzLmxlbmd0aDsgaSArPSAxKSB7CiAgICAgICAgICAgIGNvbnRlbnRMZW5ndGggPSByb3dDb250ZW50TGVuZ3RoKHJvd3NbaV0pOwogICAgICAgICAgICBpZiAoY29udGVudExlbmd0aCA9PT0gMCkgewogICAgICAgICAg";
    encoded = encoded + "ICAgICAgdGhyb3cgbmV3IEVycm9yKCJCTE9DS0VEX1JFVklFVzogaW1hZ2VzLnRzdiBjb250YWlucyBhbiBlbXB0eSBkYXRhIHJvdyIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIHRhYkNvdW50ID0gMDsKICAgICAgICAgICAgZm9yIChqID0gMDsgaiA8IGNvbnRlbnRMZW5ndGg7IGogKz0gMSkgewogICAgICAg";
    encoded = encoded + "ICAgICAgICAgaWYgKHVuc2lnbmVkQnl0ZShyb3dzW2ldW2pdKSA9PT0gOSkgewogICAgICAgICAgICAgICAgICAgIHRhYkNvdW50ICs9IDE7CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKHRhYkNvdW50ICE9PSAxMykgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9y";
    encoded = encoded + "KCJCTE9DS0VEX1JFVklFVzogaW1hZ2VzLnRzdiBkYXRhIHJvdyB3aWR0aCBtaXNtYXRjaCIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGlmIChyb3dGaXJzdENlbGxNYXRjaGVzKHJvd3NbaV0sIGNvbnRlbnRMZW5ndGgsIGltYWdlSWRCeXRlcykpIHsKICAgICAgICAgICAgICAgIGlmIChzZWxlY3RlZCAhPT0g";
    encoded = encoded + "bnVsbCkgewogICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQkxPQ0tFRF9SRVZJRVc6IGR1cGxpY2F0ZSBpbWFnZV9pZCBpbiBpbWFnZXMudHN2Iik7CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBzZWxlY3RlZCA9IHJvd3NbaV07CiAgICAgICAgICAgICAgICAvLyBUaGUgZnJvemVu";
    encoded = encoded + "IGdvbGRlbiBudW1iZXJzIHRoZSBoZWFkZXIgYXMgcm93IDEsIHRoZXJlZm9yZQogICAgICAgICAgICAgICAgLy8gdGhlIGZpcnN0IGRhdGEgcm93IGhhcyBkYXRhX3Jvd19vcmRpbmFsXzFfYmFzZWQ9Mi4KICAgICAgICAgICAgICAgIHNlbGVjdGVkT3JkaW5hbCA9IGkgKyAxOwogICAgICAgICAgICB9CiAgICAgICAg";
    encoded = encoded + "fQogICAgICAgIGlmIChzZWxlY3RlZCA9PT0gbnVsbCkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIkJMT0NLRURfUkVWSUVXOiBpbWFnZV9pZCBhYnNlbnQgZnJvbSBpbWFnZXMudHN2Iik7CiAgICAgICAgfQogICAgICAgIHJldHVybiB7CiAgICAgICAgICAgIHJlbGF0aXZlX3BhdGg6IExFR0FDWV9SRUdJ";
    encoded = encoded + "U1RSWV9SRUxBVElWRV9QQVRILAogICAgICAgICAgICBkYXRhX3Jvd19vcmRpbmFsXzFfYmFzZWQ6IHNlbGVjdGVkT3JkaW5hbCwKICAgICAgICAgICAgcm93X2V4YWN0X2J5dGVzOiBzZWxlY3RlZCwKICAgICAgICAgICAgcm93X3NoYTI1Njogc2hhMjU2Qnl0ZXMoc2VsZWN0ZWQpCiAgICAgICAgfTsKICAgIH0KCiAg";
    encoded = encoded + "ICBmdW5jdGlvbiBkZXJpdmVMZWdhY3lJbWFnZUlkZW50aXR5KHByb2plY3RSb290LCBwcm9qZWN0VWlkLCBpbWFnZUlkLCBsZWdhY3lBbmFseXNpc1Nlc3Npb25JZCkgewogICAgICAgIHZhciBwcm9qZWN0ID0gU3RyaW5nKHByb2plY3RVaWQpOwogICAgICAgIHZhciBpbWFnZSA9IHZhbGlkYXRlSHVtYW5JZChpbWFn";
    encoded = encoded + "ZUlkLCAiaW1hZ2VfaWQiKTsKICAgICAgICB2YXIgZXZpZGVuY2U7CiAgICAgICAgdmFyIGRpZ2VzdDsKICAgICAgICB2YXIgdG9rZW47CiAgICAgICAgdmFyIHBhcmVudDsKICAgICAgICB2YXIgaW1hZ2VOYW1lOwogICAgICAgIHZhciBpbWFnZVVpZDsKICAgICAgICB2YXIgc2Vzc2lvbklkOwogICAgICAgIHZhciBz";
    encoded = encoded + "ZXNzaW9uT3JpZ2luOwogICAgICAgIHZhciBsZWdhY3lTZXNzaW9uOwogICAgICAgIHZhciBzZXNzaW9uTmFtZTsKICAgICAgICB2YXIgc2Vzc2lvblVpZDsKICAgICAgICBpZiAoIS9eWzAtOWEtZl17OH0tWzAtOWEtZl17NH0tWzEtNV1bMC05YS1mXXszfS1bODlhYl1bMC05YS1mXXszfS1bMC05YS1mXXsxMn0kLy50";
    encoded = encoded + "ZXN0KHByb2plY3QpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQkxPQ0tFRF9SRVZJRVc6IHByb2plY3RfdWlkIGlzIG5vdCBjYW5vbmljYWwiKTsKICAgICAgICB9CiAgICAgICAgZXZpZGVuY2UgPSBsZWdhY3lSZWdpc3RyeUV2aWRlbmNlKHByb2plY3RSb290LCBpbWFnZSk7CiAgICAgICAgZGlnZXN0";
    encoded = encoded + "ID0gTWVzc2FnZURpZ2VzdC5nZXRJbnN0YW5jZSgiU0hBLTI1NiIpOwogICAgICAgIGRpZ2VzdC51cGRhdGUoYXNjaWlCeXRlcygiTEVHQUNZX0lNQUdFX1BBUkVOVF9UT0tFTl9WMSIpKTsKICAgICAgICB1cGRhdGVEaWdlc3RCeXRlKGRpZ2VzdCwgMCk7CiAgICAgICAgZGlnZXN0LnVwZGF0ZShuZXcgamF2YS5sYW5n";
    encoded = encoded + "LlN0cmluZyhldmlkZW5jZS5yZWxhdGl2ZV9wYXRoKS5nZXRCeXRlcyhTdGFuZGFyZENoYXJzZXRzLlVURl84KSk7CiAgICAgICAgdXBkYXRlRGlnZXN0Qnl0ZShkaWdlc3QsIDApOwogICAgICAgIGRpZ2VzdC51cGRhdGUoYXNjaWlCeXRlcyhTdHJpbmcoZXZpZGVuY2UuZGF0YV9yb3dfb3JkaW5hbF8xX2Jhc2VkKSkp";
    encoded = encoded + "OwogICAgICAgIHVwZGF0ZURpZ2VzdEJ5dGUoZGlnZXN0LCAwKTsKICAgICAgICBkaWdlc3QudXBkYXRlKGV2aWRlbmNlLnJvd19leGFjdF9ieXRlcyk7CiAgICAgICAgdG9rZW4gPSBoZXgoZGlnZXN0LmRpZ2VzdCgpKTsKICAgICAgICBwYXJlbnQgPSAidG9rZW58IiArIHRva2VuOwogICAgICAgIGltYWdlTmFtZSA9";
    encoded = encoded + "ICJpbWFnZXwiICsgcHJvamVjdCArICJ8IiArIHBhcmVudCArICJ8IiArIGltYWdlOwogICAgICAgIGltYWdlVWlkID0gdXVpZDVDdGwoaW1hZ2VOYW1lKTsKICAgICAgICBpZiAobGVnYWN5QW5hbHlzaXNTZXNzaW9uSWQgPT0gbnVsbCB8fCBTdHJpbmcobGVnYWN5QW5hbHlzaXNTZXNzaW9uSWQpID09PSAiIiB8fAog";
    encoded = encoded + "ICAgICAgICAgICAgICAgU3RyaW5nKGxlZ2FjeUFuYWx5c2lzU2Vzc2lvbklkKSA9PT0gIk5PVF9BUFBMSUNBQkxFIikgewogICAgICAgICAgICBzZXNzaW9uSWQgPSAiTEVHQUNZX1NFU1NJT05fIiArIGltYWdlVWlkLnJlcGxhY2UoLy0vZywgIiIpOwogICAgICAgICAgICBzZXNzaW9uT3JpZ2luID0gIlNZTlRIRVNJ";
    encoded = encoded + "WkVEX0xFR0FDWV9JTUFHRV9VSURfVjEiOwogICAgICAgICAgICBsZWdhY3lTZXNzaW9uID0gIk5PVF9BUFBMSUNBQkxFIjsKICAgICAgICB9IGVsc2UgewogICAgICAgICAgICBzZXNzaW9uSWQgPSB2YWxpZGF0ZUh1bWFuSWQoU3RyaW5nKGxlZ2FjeUFuYWx5c2lzU2Vzc2lvbklkKSwgImxlZ2FjeV9hbmFseXNpc19z";
    encoded = encoded + "ZXNzaW9uX2lkIik7CiAgICAgICAgICAgIHNlc3Npb25PcmlnaW4gPSAiUFJFU0VSVkVEX0xFR0FDWSI7CiAgICAgICAgICAgIGxlZ2FjeVNlc3Npb24gPSBzZXNzaW9uSWQ7CiAgICAgICAgfQogICAgICAgIHNlc3Npb25OYW1lID0gImxlZ2FjeS1zZXNzaW9ufCIgKyBwcm9qZWN0ICsgInwiICsgaW1hZ2VVaWQgKyAi";
    encoded = encoded + "fCIgKyBzZXNzaW9uSWQ7CiAgICAgICAgc2Vzc2lvblVpZCA9IHV1aWQ1Q3RsKHNlc3Npb25OYW1lKTsKICAgICAgICByZXR1cm4gewogICAgICAgICAgICBpbWFnZV91aWQ6IGltYWdlVWlkLAogICAgICAgICAgICBpbWFnZV91aWRfZ2VuZXJhdGlvbl9tZXRob2Q6ICJVVUlEVjVfQ1RMX0xFR0FDWV9WMSIsCiAgICAg";
    encoded = encoded + "ICAgICAgIGltYWdlX3VpZF9uYW1lX3RlbXBsYXRlX2lkOiAiSU1BR0VfVUlEX1YxIiwKICAgICAgICAgICAgaW1hZ2VfdWlkX25hbWVfdXRmOF9zaGEyNTY6IHNoYTI1NlRleHQoaW1hZ2VOYW1lKSwKICAgICAgICAgICAgaW1hZ2VfcGFyZW50X2lkZW50aXR5X2NvbXBvbmVudDogcGFyZW50LAogICAgICAgICAgICBs";
    encoded = encoded + "ZWdhY3lfaW1hZ2VfcGFyZW50X2lkZW50aXR5X3Rva2VuOiB0b2tlbiwKICAgICAgICAgICAgbGVnYWN5X2ltYWdlX3BhcmVudF9pZGVudGl0eV90b2tlbl9tZXRob2Q6ICJMRUdBQ1lfSU1BR0VfUEFSRU5UX1RPS0VOX1YxIiwKICAgICAgICAgICAgbGVnYWN5X2ltYWdlX3JlZ2lzdHJ5X3JlbGF0aXZlX3BhdGg6IGV2";
    encoded = encoded + "aWRlbmNlLnJlbGF0aXZlX3BhdGgsCiAgICAgICAgICAgIGxlZ2FjeV9pbWFnZV9yZWdpc3RyeV9yb3dfb3JkaW5hbDogU3RyaW5nKGV2aWRlbmNlLmRhdGFfcm93X29yZGluYWxfMV9iYXNlZCksCiAgICAgICAgICAgIGxlZ2FjeV9pbWFnZV9yZWdpc3RyeV9yb3dfc2hhMjU2OiBldmlkZW5jZS5yb3dfc2hhMjU2LAog";
    encoded = encoded + "ICAgICAgICAgICBhbmFseXNpc19zZXNzaW9uX2lkOiBzZXNzaW9uSWQsCiAgICAgICAgICAgIGFuYWx5c2lzX3Nlc3Npb25faWRfb3JpZ2luOiBzZXNzaW9uT3JpZ2luLAogICAgICAgICAgICBhbmFseXNpc19zZXNzaW9uX3VpZDogc2Vzc2lvblVpZCwKICAgICAgICAgICAgYW5hbHlzaXNfc2Vzc2lvbl91aWRfZ2Vu";
    encoded = encoded + "ZXJhdGlvbl9tZXRob2Q6ICJVVUlEVjVfQ1RMX0xFR0FDWV9WMSIsCiAgICAgICAgICAgIGFuYWx5c2lzX3Nlc3Npb25fdWlkX25hbWVfdGVtcGxhdGVfaWQ6ICJTRVNTSU9OX1VJRF9WMSIsCiAgICAgICAgICAgIGFuYWx5c2lzX3Nlc3Npb25fdWlkX25hbWVfdXRmOF9zaGEyNTY6IHNoYTI1NlRleHQoc2Vzc2lvbk5h";
    encoded = encoded + "bWUpLAogICAgICAgICAgICBsZWdhY3lfYW5hbHlzaXNfc2Vzc2lvbl9pZDogbGVnYWN5U2Vzc2lvbiwKICAgICAgICAgICAgbGVnYWN5X2FuYWx5c2lzX3Nlc3Npb25faWRlbnRpdHlfY29tcG9uZW50OiBzZXNzaW9uSWQsCiAgICAgICAgICAgIGxlZ2FjeV9hbmFseXNpc19zZXNzaW9uX2lkZW50aXR5X2NvbXBvbmVu";
    encoded = encoded + "dF9vcmlnaW46IHNlc3Npb25PcmlnaW4KICAgICAgICB9OwogICAgfQoKICAgIGZ1bmN0aW9uIGNhbm9uaWNhbENvbnRleHRUZXh0KGNvbnRleHQpIHsKICAgICAgICB2YXIgcGFydHMgPSBbXTsKICAgICAgICB2YXIgaTsKICAgICAgICBmb3IgKGkgPSAwOyBpIDwgUkVRVUlSRURfQ09OVEVYVF9LRVlTLmxlbmd0aDsg";
    encoded = encoded + "aSArPSAxKSB7CiAgICAgICAgICAgIHBhcnRzLnB1c2goUkVRVUlSRURfQ09OVEVYVF9LRVlTW2ldICsgIj0iICsgU3RyaW5nKGNvbnRleHRbUkVRVUlSRURfQ09OVEVYVF9LRVlTW2ldXSkpOwogICAgICAgIH0KICAgICAgICBwYXJ0cy5wdXNoKCJyZXZpc2lvbl9pZD0iICsgY29udGV4dC5yZXZpc2lvbl9pZCk7CiAg";
    encoded = encoded + "ICAgICAgcGFydHMucHVzaCgicmV2aXNpb25fdWlkPSIgKyBjb250ZXh0LnJldmlzaW9uX3VpZCk7CiAgICAgICAgcGFydHMucHVzaCgid29ya2luZ19zdGF0ZV9pZD0iICsgY29udGV4dC53b3JraW5nX3N0YXRlX2lkKTsKICAgICAgICByZXR1cm4gcGFydHMuam9pbigiXG4iKSArICJcbiI7CiAgICB9CgogICAgZnVu";
    encoded = encoded + "Y3Rpb24gdG9Db250ZXh0SnNvbihjb250ZXh0KSB7CiAgICAgICAgdmFyIGZpZWxkcyA9IFsKICAgICAgICAgICAgInNjaGVtYSIsICJwcm9qZWN0X2lkIiwgInByb2plY3RfdWlkIiwgImltYWdlX2lkIiwgImltYWdlX3VpZCIsCiAgICAgICAgICAgICJzb3VyY2Vfc2hhMjU2IiwgIm1hc3Rlcl9waXhlbF9zaGEyNTYi";
    encoded = encoded + "LCAiYW5hbHlzaXNfc2Vzc2lvbl9pZCIsCiAgICAgICAgICAgICJhbmFseXNpc19zZXNzaW9uX3VpZCIsICJyZXZpc2lvbl9pZCIsICJyZXZpc2lvbl91aWQiLAogICAgICAgICAgICAid29ya2luZ19zdGF0ZV9pZCIsICJzdGF0ZV9pZGVudGl0eSIsICJpbWFnZXBsdXNfaWRlbnRpdHkiLAogICAgICAgICAgICAid2lu";
    encoded = encoded + "ZG93X2lkZW50aXR5IiwgIm9iamVjdF91dWlkIiwgImNhdml0eV9pZCIsCiAgICAgICAgICAgICJzZWxlY3Rpb25fcmV2aXNpb24iLCAiZ2VuZXJhdGlvbl90b2tlbiIsICJjb21tYW5kX2lkIiwKICAgICAgICAgICAgImNvbnRleHRfZmluZ2VycHJpbnRfc2hhMjU2IgogICAgICAgIF07CiAgICAgICAgdmFyIHBsYWlu";
    encoded = encoded + "ID0ge307CiAgICAgICAgdmFyIGk7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IGZpZWxkcy5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICBwbGFpbltmaWVsZHNbaV1dID0gY29udGV4dFtmaWVsZHNbaV1dOwogICAgICAgIH0KICAgICAgICByZXR1cm4gSlNPTi5zdHJpbmdpZnkocGxhaW4pOwogICAgfQoKICAg";
    encoded = encoded + "IGZ1bmN0aW9uIHZhbGlkYXRlU2hhKHZhbHVlLCBsYWJlbCkgewogICAgICAgIGlmICghL15bMC05YS1mXXs2NH0kLy50ZXN0KFN0cmluZyh2YWx1ZSkpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5WQUxJRF9PUEVSQVRJT05fQ09OVEVYVDogIiArIGxhYmVsKTsKICAgICAgICB9CiAgICB9CgogICAg";
    encoded = encoded + "ZnVuY3Rpb24gY2FwdHVyZShpbXAsIGNvbW1hbmRJZCwgdXNlSW1hZ2VQbHVzUm9pKSB7CiAgICAgICAgdmFyIHJvaTsKICAgICAgICB2YXIgcmV2aXNpb25JZDsKICAgICAgICB2YXIgcmV2aXNpb25VaWQ7CiAgICAgICAgdmFyIHdvcmtpbmdTdGF0ZUlkOwogICAgICAgIHZhciB3aW5kb3c7CiAgICAgICAgdmFyIGNv";
    encoded = encoded + "bnRleHQ7CiAgICAgICAgaWYgKGltcCA9PSBudWxsKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5WQUxJRF9PUEVSQVRJT05fQ09OVEVYVDogbm8gSW1hZ2VQbHVzIik7CiAgICAgICAgfQogICAgICAgIC8vIEltYWdlIHN3aXRjaGluZyBpbnRlbnRpb25hbGx5IHNuYXBzaG90cyBpbWFnZS9zZXNzaW9u";
    encoded = encoded + "IHN0YXRlLCBub3QgdGhlCiAgICAgICAgLy8gcHJvY2Vzcy1nbG9iYWwgUk9JIE1hbmFnZXIgc2VsZWN0aW9uIHRoYXQgd2lsbCBiZWxvbmcgdG8gdGhlIHRhcmdldC4KICAgICAgICByb2kgPSBTdHJpbmcoY29tbWFuZElkKSA9PT0gIklNQUdFX1NXSVRDSCIgPyBudWxsIDoKICAgICAgICAgICAgKHVzZUltYWdlUGx1";
    encoded = encoded + "c1JvaSA9PT0gdHJ1ZSA/IGltcC5nZXRSb2koKSA6IHNlbGVjdGVkUm9pKGltcCkpOwogICAgICAgIHJldmlzaW9uSWQgPSBmaXJzdEltYWdlUHJvcGVydHkoaW1wLCBbIkNUTC5QMS5yZXZpc2lvbl9pZCIsICJDYXZpdHlURU1MaWdodC5SZXZpc2lvbklkIl0sICJOT1RfQVBQTElDQUJMRSIpOwogICAgICAgIHJldmlz";
    encoded = encoded + "aW9uVWlkID0gZmlyc3RJbWFnZVByb3BlcnR5KGltcCwgWyJDVEwuUDEucmV2aXNpb25fdWlkIiwgIkNhdml0eVRFTUxpZ2h0LlJldmlzaW9uVWlkIl0sICJOT1RfQVBQTElDQUJMRSIpOwogICAgICAgIHdvcmtpbmdTdGF0ZUlkID0gZmlyc3RJbWFnZVByb3BlcnR5KGltcCwgWyJDVEwuUDEud29ya2luZ19zdGF0ZV9p";
    encoded = encoded + "ZCIsICJDYXZpdHlURU1MaWdodC5Xb3JraW5nU3RhdGVJZCJdLCAiTk9UX0FQUExJQ0FCTEUiKTsKICAgICAgICBpZiAocmV2aXNpb25JZCAhPT0gIk5PVF9BUFBMSUNBQkxFIiAmJiB3b3JraW5nU3RhdGVJZCAhPT0gIk5PVF9BUFBMSUNBQkxFIikgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVkFMSURf";
    encoded = encoded + "T1BFUkFUSU9OX0NPTlRFWFQ6IHJldmlzaW9uIGFuZCB3b3JraW5nIHN0YXRlIGFyZSBtdXR1YWxseSBleGNsdXNpdmUiKTsKICAgICAgICB9CiAgICAgICAgaWYgKHJldmlzaW9uSWQgPT09ICJOT1RfQVBQTElDQUJMRSIgJiYgd29ya2luZ1N0YXRlSWQgPT09ICJOT1RfQVBQTElDQUJMRSIpIHsKICAgICAgICAgICAg";
    encoded = encoded + "dGhyb3cgbmV3IEVycm9yKCJJTlZBTElEX09QRVJBVElPTl9DT05URVhUOiByZXZpc2lvbiBvciB3b3JraW5nIHN0YXRlIHJlcXVpcmVkIik7CiAgICAgICAgfQogICAgICAgIGlmICgocmV2aXNpb25JZCA9PT0gIk5PVF9BUFBMSUNBQkxFIikgIT09IChyZXZpc2lvblVpZCA9PT0gIk5PVF9BUFBMSUNBQkxFIikpIHsK";
    encoded = encoded + "ICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJJTlZBTElEX09QRVJBVElPTl9DT05URVhUOiByZXZpc2lvbiBpZC91aWQgcGFpciBpbmNvbXBsZXRlIik7CiAgICAgICAgfQogICAgICAgIHdpbmRvdyA9IGltcC5nZXRXaW5kb3coKTsKICAgICAgICBjb250ZXh0ID0gewogICAgICAgICAgICBzY2hlbWE6ICJDVExf";
    encoded = encoded + "T1BFUkFUSU9OX0NPTlRFWFRfVjEiLAogICAgICAgICAgICBwcm9qZWN0X2lkOiBmaXJzdEltYWdlUHJvcGVydHkoaW1wLCBbIkNUTC5QMS5wcm9qZWN0X2lkIiwgIkNhdml0eVRFTUxpZ2h0LlByb2plY3RJZCJdLCAiIiksCiAgICAgICAgICAgIHByb2plY3RfdWlkOiBmaXJzdEltYWdlUHJvcGVydHkoaW1wLCBbIkNU";
    encoded = encoded + "TC5QMS5wcm9qZWN0X3VpZCIsICJDYXZpdHlURU1MaWdodC5Qcm9qZWN0VWlkIl0sICIiKSwKICAgICAgICAgICAgaW1hZ2VfaWQ6IGZpcnN0SW1hZ2VQcm9wZXJ0eShpbXAsIFsiQ1RMLlAxLmltYWdlX2lkIiwgIkNhdml0eVRFTUxpZ2h0LkltYWdlSWQiXSwgIiIpLAogICAgICAgICAgICBpbWFnZV91aWQ6IGZpcnN0";
    encoded = encoded + "SW1hZ2VQcm9wZXJ0eShpbXAsIFsiQ1RMLlAxLmltYWdlX3VpZCIsICJDYXZpdHlURU1MaWdodC5JbWFnZVVpZCJdLCAiIiksCiAgICAgICAgICAgIHNvdXJjZV9zaGEyNTY6IGZpcnN0SW1hZ2VQcm9wZXJ0eShpbXAsIFsiQ1RMLlAxLnNvdXJjZV9zaGEyNTYiLCAiQ2F2aXR5VEVNTGlnaHQuU291cmNlU0hBMjU2Il0s";
    encoded = encoded + "ICIiKSwKICAgICAgICAgICAgbWFzdGVyX3BpeGVsX3NoYTI1NjogZmlyc3RJbWFnZVByb3BlcnR5KGltcCwgWyJDVEwuUDEubWFzdGVyX3BpeGVsX3NoYTI1NiJdLCAiIiksCiAgICAgICAgICAgIGFuYWx5c2lzX3Nlc3Npb25faWQ6IGZpcnN0SW1hZ2VQcm9wZXJ0eShpbXAsIFsiQ1RMLlAxLmFuYWx5c2lzX3Nlc3Np";
    encoded = encoded + "b25faWQiXSwgIiIpLAogICAgICAgICAgICBhbmFseXNpc19zZXNzaW9uX3VpZDogZmlyc3RJbWFnZVByb3BlcnR5KGltcCwgWyJDVEwuUDEuYW5hbHlzaXNfc2Vzc2lvbl91aWQiXSwgIiIpLAogICAgICAgICAgICByZXZpc2lvbl9pZDogcmV2aXNpb25JZCwKICAgICAgICAgICAgcmV2aXNpb25fdWlkOiByZXZpc2lv";
    encoded = encoded + "blVpZCwKICAgICAgICAgICAgd29ya2luZ19zdGF0ZV9pZDogd29ya2luZ1N0YXRlSWQsCiAgICAgICAgICAgIHN0YXRlX2lkZW50aXR5OiByZXZpc2lvbklkICE9PSAiTk9UX0FQUExJQ0FCTEUiID8gcmV2aXNpb25JZCArICJ8IiArIHJldmlzaW9uVWlkIDogd29ya2luZ1N0YXRlSWQsCiAgICAgICAgICAgIGltYWdl";
    encoded = encoded + "cGx1c19pZGVudGl0eTogU3RyaW5nKGltcC5nZXRJRCgpKSwKICAgICAgICAgICAgd2luZG93X2lkZW50aXR5OiB3aW5kb3cgPT0gbnVsbCA/ICJOT19XSU5ET1ciIDogU3RyaW5nKFN5c3RlbS5pZGVudGl0eUhhc2hDb2RlKHdpbmRvdykpLAogICAgICAgICAgICBvYmplY3RfdXVpZDogcm9pVXVpZChyb2kpLAogICAg";
    encoded = encoded + "ICAgICAgICBjYXZpdHlfaWQ6IGlzQ2F2aXR5Um9pKHJvaSkgPyByb2lDYXZpdHlJZChyb2kpIDoKICAgICAgICAgICAgICAgIHJvaVByb3BlcnR5KHJvaSwgWyJPYmplY3RfaWQiXSwgIk5PVF9BUFBMSUNBQkxFIiksCiAgICAgICAgICAgIHNlbGVjdGlvbl9yZXZpc2lvbjogZmlyc3RJbWFnZVByb3BlcnR5KGltcCwg";
    encoded = encoded + "WyJDVEwuUDEuc2VsZWN0aW9uX3JldmlzaW9uIl0sICIwIiksCiAgICAgICAgICAgIGdlbmVyYXRpb25fdG9rZW46IGZpcnN0SW1hZ2VQcm9wZXJ0eShpbXAsIFsiQ1RMLlAxLmdlbmVyYXRpb25fdG9rZW4iXSwgIjAiKSwKICAgICAgICAgICAgY29tbWFuZF9pZDogU3RyaW5nKGNvbW1hbmRJZCkKICAgICAgICB9Owog";
    encoded = encoded + "ICAgICAgIGlmIChjb250ZXh0LnByb2plY3RfaWQgPT09ICIiIHx8IGNvbnRleHQucHJvamVjdF91aWQgPT09ICIiIHx8IGNvbnRleHQuaW1hZ2VfaWQgPT09ICIiIHx8CiAgICAgICAgICAgICAgICBjb250ZXh0LmltYWdlX3VpZCA9PT0gIiIgfHwKICAgICAgICAgICAgICAgIGNvbnRleHQuYW5hbHlzaXNfc2Vzc2lv";
    encoded = encoded + "bl9pZCA9PT0gIiIgfHwgY29udGV4dC5hbmFseXNpc19zZXNzaW9uX3VpZCA9PT0gIiIpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJJTlZBTElEX09QRVJBVElPTl9DT05URVhUOiByZXF1aXJlZCBpZGVudGl0eSBtaXNzaW5nIik7CiAgICAgICAgfQogICAgICAgIHZhbGlkYXRlU2hhKGNvbnRleHQuc291";
    encoded = encoded + "cmNlX3NoYTI1NiwgInNvdXJjZV9zaGEyNTYiKTsKICAgICAgICB2YWxpZGF0ZVNoYShjb250ZXh0Lm1hc3Rlcl9waXhlbF9zaGEyNTYsICJtYXN0ZXJfcGl4ZWxfc2hhMjU2Iik7CiAgICAgICAgaWYgKCEvXlxkKyQvLnRlc3QoY29udGV4dC5zZWxlY3Rpb25fcmV2aXNpb24pIHx8ICEvXlxkKyQvLnRlc3QoY29udGV4";
    encoded = encoded + "dC5nZW5lcmF0aW9uX3Rva2VuKSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVkFMSURfT1BFUkFUSU9OX0NPTlRFWFQ6IHJldmlzaW9uL2dlbmVyYXRpb24gY291bnRlciBpbnZhbGlkIik7CiAgICAgICAgfQogICAgICAgIGNvbnRleHQuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYgPSBzaGEyNTZU";
    encoded = encoded + "ZXh0KGNhbm9uaWNhbENvbnRleHRUZXh0KGNvbnRleHQpKTsKICAgICAgICBjb250ZXh0Lmpzb24gPSB0b0NvbnRleHRKc29uKGNvbnRleHQpOwogICAgICAgIGNvbnRleHQuaW1wID0gaW1wOwogICAgICAgIHJldHVybiBjb250ZXh0OwogICAgfQoKICAgIGZ1bmN0aW9uIHNhbWVJbWFnZUNvbnRleHQoc25hcHNob3Qs";
    encoded = encoded + "IHJlcXVpcmVGb2N1cykgewogICAgICAgIHZhciBsaXZlOwogICAgICAgIGlmIChzbmFwc2hvdCA9PSBudWxsIHx8IHNuYXBzaG90LmltcCA9PSBudWxsIHx8IHNuYXBzaG90LmltcC5nZXRXaW5kb3coKSA9PSBudWxsKSB7CiAgICAgICAgICAgIHJldHVybiBmYWxzZTsKICAgICAgICB9CiAgICAgICAgaWYgKHJlcXVp";
    encoded = encoded + "cmVGb2N1cyAmJiBXTS5nZXRDdXJyZW50SW1hZ2UoKSAhPT0gc25hcHNob3QuaW1wKSB7CiAgICAgICAgICAgIHJldHVybiBmYWxzZTsKICAgICAgICB9CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgbGl2ZSA9IGNhcHR1cmUoc25hcHNob3QuaW1wLCBzbmFwc2hvdC5jb21tYW5kX2lkKTsKICAgICAgICAgICAgcmV0";
    encoded = encoded + "dXJuIGxpdmUuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYgPT09IHNuYXBzaG90LmNvbnRleHRfZmluZ2VycHJpbnRfc2hhMjU2OwogICAgICAgIH0gY2F0Y2ggKGlnbm9yZWQpIHsKICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0KICAgIH0KCiAgICBmdW5jdGlvbiBzYW1lQ29udGV4dChzbmFwc2hv";
    encoded = encoded + "dCkgewogICAgICAgIHJldHVybiBzYW1lSW1hZ2VDb250ZXh0KHNuYXBzaG90LCB0cnVlKTsKICAgIH0KCiAgICBmdW5jdGlvbiBhdWRpdFN0YWxlKHNuYXBzaG90LCBkZXRhaWwpIHsKICAgICAgICB2YXIgaW1wID0gc25hcHNob3QgPT0gbnVsbCA/IG51bGwgOiBzbmFwc2hvdC5pbXA7CiAgICAgICAgaWYgKGltcCAh";
    encoded = encoded + "PSBudWxsKSB7CiAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnQiLCAiU1RBTEVfQ09OVEVYVF9DQU5DRUxMRUQiKTsKICAgICAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGFzdF9ldmVudF9kZXRhaWwiLCBTdHJpbmcoZGV0YWlsKSk7CiAgICAgICAgICAgIGltcC5zZXRQ";
    encoded = encoded + "cm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnRfbXV0YXRpb25zIiwgIjAiKTsKICAgICAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGFzdF9ldmVudF9yb2lfbWFuYWdlcl9jaGFuZ2VzIiwgIjAiKTsKICAgICAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGFzdF9ldmVudF9kaXNrX3dyaXRlcyIs";
    encoded = encoded + "ICJBVURJVF9FVkVOVF9PTkxZIik7CiAgICAgICAgfQogICAgICAgIElKLmxvZygiQ1RMIFAxIFNUQUxFX0NPTlRFWFRfQ0FOQ0VMTEVEOiAiICsgU3RyaW5nKGRldGFpbCkpOwogICAgfQoKICAgIGZ1bmN0aW9uIG9uRWR0QW5kV2FpdChmbikgewogICAgICAgIHZhciBmYWlsdXJlID0gbnVsbDsKICAgICAgICB2YXIg";
    encoded = encoded + "cmVzdWx0OwogICAgICAgIHZhciBib2R5ID0gYWRhcHRlcihSdW5uYWJsZSwgewogICAgICAgICAgICBydW46IGZ1bmN0aW9uICgpIHsKICAgICAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgcmVzdWx0ID0gZm4oKTsKICAgICAgICAgICAgICAgIH0gY2F0Y2ggKGVycm9yKSB7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgZmFpbHVyZSA9IGVycm9yOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9CiAgICAgICAgfSk7CiAgICAgICAgaWYgKFN3aW5nVXRpbGl0aWVzLmlzRXZlbnREaXNwYXRjaFRocmVhZCgpKSB7CiAgICAgICAgICAgIGJvZHkucnVuKCk7CiAgICAgICAgfSBlbHNlIHsKICAgICAgICAgICAgU3dp";
    encoded = encoded + "bmdVdGlsaXRpZXMuaW52b2tlQW5kV2FpdChib2R5KTsKICAgICAgICB9CiAgICAgICAgaWYgKGZhaWx1cmUgIT0gbnVsbCkgewogICAgICAgICAgICB0aHJvdyBmYWlsdXJlOwogICAgICAgIH0KICAgICAgICByZXR1cm4gcmVzdWx0OwogICAgfQoKICAgIGZ1bmN0aW9uIGV2dDAwNkJhcnJpZXJDYW5vbmljYWwobWFy";
    encoded = encoded + "a2VyKSB7CiAgICAgICAgLy8gQnl0ZSBmb3JtIGVtaXR0ZWQgYnkgdGhlIGNvbW1pdHRlZCBoYXJuZXNzOgogICAgICAgIC8vIEpTT04uc3RyaW5naWZ5KG9yZGVyZWQobWFya2VyKSwgbnVsbCwgMikgKyAiXG4iLgogICAgICAgIHJldHVybiAie1xuIiArCiAgICAgICAgICAgICIgIFwiY2FtcGFpZ25faWRcIjogXCIi";
    encoded = encoded + "ICsgbWFya2VyLmNhbXBhaWduX2lkICsgIlwiLFxuIiArCiAgICAgICAgICAgICIgIFwiZW5hYmxlZFwiOiB0cnVlLFxuIiArCiAgICAgICAgICAgICIgIFwiaW1wbGVtZW50YXRpb25fY29tbWl0XCI6IFwiIiArIG1hcmtlci5pbXBsZW1lbnRhdGlvbl9jb21taXQgKyAiXCIsXG4iICsKICAgICAgICAgICAgIiAgXCJv";
    encoded = encoded + "d25lcl9pbWFnZXBsdXNfaWRcIjogXCIiICsgbWFya2VyLm93bmVyX2ltYWdlcGx1c19pZCArICJcIixcbiIgKwogICAgICAgICAgICAiICBcIm93bmVyX3dpbmRvd19pZGVudGl0eVwiOiBcIiIgKyBtYXJrZXIub3duZXJfd2luZG93X2lkZW50aXR5ICsgIlwiLFxuIiArCiAgICAgICAgICAgICIgIFwic2NoZW1hXCI6";
    encoded = encoded + "IFwiIiArIEVWVDAwNl9CQVJSSUVSX1NDSEVNQSArICJcIixcbiIgKwogICAgICAgICAgICAiICBcInRhcmdldF9pbWFnZXBsdXNfaWRcIjogXCIiICsgbWFya2VyLnRhcmdldF9pbWFnZXBsdXNfaWQgKyAiXCIsXG4iICsKICAgICAgICAgICAgIiAgXCJ0YXJnZXRfd2luZG93X2lkZW50aXR5XCI6IFwiIiArIG1hcmtl";
    encoded = encoded + "ci50YXJnZXRfd2luZG93X2lkZW50aXR5ICsgIlwiLFxuIiArCiAgICAgICAgICAgICIgIFwidGltZW91dF9tc1wiOiAiICsgRVZUMDA2X0JBUlJJRVJfVElNRU9VVF9NUyArICJcbiIgKwogICAgICAgICAgICAifVxuIjsKICAgIH0KCiAgICBmdW5jdGlvbiBldnQwMDZCYXJyaWVyVGVsZW1ldHJ5TWF0Y2hlcyhtYXJr";
    encoded = encoded + "ZXIpIHsKICAgICAgICB0ZWxlbWV0cnlMb2NrLmxvY2soKTsKICAgICAgICB0cnkgewogICAgICAgICAgICByZXR1cm4gdGVsZW1ldHJ5U3RhdGUgIT0gbnVsbCAmJiB0ZWxlbWV0cnlTdGF0ZS5vdmVyZmxvd2VkID09PSBmYWxzZSAmJgogICAgICAgICAgICAgICAgdGVsZW1ldHJ5U3RhdGUuY2FtcGFpZ25faWQgPT09";
    encoded = encoded + "IFN0cmluZyhtYXJrZXIuY2FtcGFpZ25faWQpICYmCiAgICAgICAgICAgICAgICB0ZWxlbWV0cnlTdGF0ZS5pbXBsZW1lbnRhdGlvbl9jb21taXQgPT09CiAgICAgICAgICAgICAgICAgICAgU3RyaW5nKG1hcmtlci5pbXBsZW1lbnRhdGlvbl9jb21taXQpOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHRl";
    encoded = encoded + "bGVtZXRyeUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIGV2dDAwNkNsYWltQmFycmllck9uRWR0KGdhdGVMb2NrLCBnYXRlLCBkZWFkbGluZU5hbm9zKSB7CiAgICAgICAgdmFyIGNsYWltZWQgPSBmYWxzZTsKICAgICAgICB2YXIgbm93TmFub3M7CiAgICAgICAgZ2F0ZUxvY2subG9j";
    encoded = encoded + "aygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGlmIChnYXRlLnN0YXR1cyA9PT0gIldBSVRJTkciKSB7CiAgICAgICAgICAgICAgICBub3dOYW5vcyA9IE51bWJlcihTeXN0ZW0ubmFub1RpbWUoKSk7CiAgICAgICAgICAgICAgICBpZiAobm93TmFub3MgPD0gTnVtYmVyKGRlYWRsaW5lTmFub3MpKSB7CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgZ2F0ZS5zdGF0dXMgPSAiUlVOTklORyI7CiAgICAgICAgICAgICAgICAgICAgY2xhaW1lZCA9IHRydWU7CiAgICAgICAgICAgICAgICB9IGVsc2UgewogICAgICAgICAgICAgICAgICAgIC8vIEEgZGVsYXllZCBJbnZvY2F0aW9uRXZlbnQgaXMgaXRzZWxmIHRoZSBjYW5jZWxsYXRpb24KICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAvLyBvd25lciB3aGVuIGl0IHJlYWNoZXMgdGhlIEVEVCBhZnRlciB0aGUgc3RhcnQgZGVhZGxpbmUuCiAgICAgICAgICAgICAgICAgICAgZ2F0ZS5zdGF0dXMgPSAiQ0FOQ0VMTEVEX1NUQVJUX1RJTUVPVVQiOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9CiAgICAgICAgfSBm";
    encoded = encoded + "aW5hbGx5IHsKICAgICAgICAgICAgZ2F0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgICAgIHJldHVybiBjbGFpbWVkOwogICAgfQoKICAgIGZ1bmN0aW9uIGV2dDAwNkZpbmlzaEJhcnJpZXJPbkVkdChnYXRlTG9jaywgZ2F0ZSwgYWN0aXZhdGlvbkZhaWx1cmUpIHsKICAgICAgICBnYXRlTG9jay5sb2NrKCk7";
    encoded = encoded + "CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgaWYgKGdhdGUuc3RhdHVzICE9PSAiUlVOTklORyIpIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiRVZUMDA2X0JBUlJJRVJfSUxMRUdBTF9FRFRfVEVSTUlOQUxfU1RBVEUiKTsKICAgICAgICAgICAgfQogICAgICAgICAgICBnYXRlLmZhaWx1cmUgPSBh";
    encoded = encoded + "Y3RpdmF0aW9uRmFpbHVyZTsKICAgICAgICAgICAgZ2F0ZS5zdGF0dXMgPSBhY3RpdmF0aW9uRmFpbHVyZSA9PSBudWxsID8gIlNVQ0NFRURFRCIgOiAiRkFJTEVEIjsKICAgICAgICB9IGZpbmFsbHkgewogICAgICAgICAgICBnYXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gZXZ0";
    encoded = encoded + "MDA2Q2FuY2VsQmFycmllcklmV2FpdGluZygKICAgICAgICAgICAgZ2F0ZUxvY2ssIGdhdGUsIGRlYWRsaW5lTmFub3MsIGNhbmNlbGxlZFN0YXR1cywgZm9yY2VDYW5jZWxsYXRpb24pIHsKICAgICAgICB2YXIgY2FuY2VsbGVkID0gZmFsc2U7CiAgICAgICAgdmFyIG5vd05hbm9zOwogICAgICAgIGdhdGVMb2NrLmxv";
    encoded = encoded + "Y2soKTsKICAgICAgICB0cnkgewogICAgICAgICAgICAvLyBUaGUgd29ya2VyIG93bnMgY2FuY2VsbGF0aW9uIG9ubHkgdW50aWwgdGhlIEVEVCBoYXMgY2xhaW1lZCB0aGUKICAgICAgICAgICAgLy8gb3BlcmF0aW9uLiAgUlVOTklORyBpcyBkZWxpYmVyYXRlbHkgbmV2ZXIgY29udmVydGVkIHRvIGEKICAgICAgICAg";
    encoded = encoded + "ICAgLy8gdGltZW91dDogdGhlIHdvcmtlciBtdXN0IGpvaW4gdGhlIGZpbml0ZSBpbnRlcm5hbCBhY3RpdmF0aW9uLgogICAgICAgICAgICBub3dOYW5vcyA9IE51bWJlcihTeXN0ZW0ubmFub1RpbWUoKSk7CiAgICAgICAgICAgIGlmIChnYXRlLnN0YXR1cyA9PT0gIldBSVRJTkciICYmCiAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgKGZvcmNlQ2FuY2VsbGF0aW9uID09PSB0cnVlIHx8CiAgICAgICAgICAgICAgICAgICAgIG5vd05hbm9zID4gTnVtYmVyKGRlYWRsaW5lTmFub3MpKSkgewogICAgICAgICAgICAgICAgZ2F0ZS5zdGF0dXMgPSBTdHJpbmcoY2FuY2VsbGVkU3RhdHVzKTsKICAgICAgICAgICAgICAgIGNhbmNlbGxlZCA9IHRydWU7";
    encoded = encoded + "CiAgICAgICAgICAgIH0KICAgICAgICB9IGZpbmFsbHkgewogICAgICAgICAgICBnYXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIGNhbmNlbGxlZDsKICAgIH0KCiAgICBmdW5jdGlvbiBldnQwMDZBd2FpdEJhcnJpZXJDb21wbGV0aW9uKGNvbXBsZXRpb24pIHsKICAgICAgICB2YXIgaW50";
    encoded = encoded + "ZXJydXB0ZWQgPSBmYWxzZTsKICAgICAgICB2YXIgY29tcGxldGUgPSBmYWxzZTsKICAgICAgICB3aGlsZSAoIWNvbXBsZXRlKSB7CiAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICBjb21wbGV0aW9uLmF3YWl0KCk7CiAgICAgICAgICAgICAgICBjb21wbGV0ZSA9IHRydWU7CiAgICAgICAgICAgIH0gY2F0";
    encoded = encoded + "Y2ggKHdhaXRJbnRlcnJ1cHRlZCkgewogICAgICAgICAgICAgICAgLy8gQ291bnREb3duTGF0Y2guYXdhaXQgY2xlYXJzIHRoZSBKYXZhIGludGVycnVwdCBmbGFnLiAgS2VlcAogICAgICAgICAgICAgICAgLy8gam9pbmluZyB1bnRpbCB0aGUgRURUIGhhcyByZWFjaGVkIGEgdmVyaWZpZWQgdGVybWluYWwsIHRoZW4K";
    encoded = encoded + "ICAgICAgICAgICAgICAgIC8vIG1ha2UgdGhlIGNvbW1hbmQgZmFpbCBjbG9zZWQgb24gdGhlIHdvcmtlci4KICAgICAgICAgICAgICAgIGludGVycnVwdGVkID0gdHJ1ZTsKICAgICAgICAgICAgfQogICAgICAgIH0KICAgICAgICByZXR1cm4gaW50ZXJydXB0ZWQ7CiAgICB9CgogICAgZnVuY3Rpb24gZXZ0MDA2QWN0";
    encoded = encoded + "aXZhdGVUYXJnZXRPbkVkdCgKICAgICAgICAgICAgb3duZXJJbXAsIHRhcmdldEltcCwgb3duZXJXaW5kb3dJZGVudGl0eSwgdGFyZ2V0V2luZG93SWRlbnRpdHkpIHsKICAgICAgICB2YXIgb3duZXJXaW5kb3cgPSBvd25lckltcCA9PSBudWxsID8gbnVsbCA6IG93bmVySW1wLmdldFdpbmRvdygpOwogICAgICAgIHZh";
    encoded = encoded + "ciB0YXJnZXRXaW5kb3cgPSB0YXJnZXRJbXAgPT0gbnVsbCA/IG51bGwgOiB0YXJnZXRJbXAuZ2V0V2luZG93KCk7CiAgICAgICAgdmFyIHRhcmdldENhbnZhcyA9IHRhcmdldEltcCA9PSBudWxsID8gbnVsbCA6IHRhcmdldEltcC5nZXRDYW52YXMoKTsKICAgICAgICBpZiAoIVN3aW5nVXRpbGl0aWVzLmlzRXZlbnRE";
    encoded = encoded + "aXNwYXRjaFRocmVhZCgpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiRVZUMDA2X0JBUlJJRVJfQUNUSVZBVElPTl9PRkZfRURUIik7CiAgICAgICAgfQogICAgICAgIGlmIChvd25lckltcCA9PSBudWxsIHx8IHRhcmdldEltcCA9PSBudWxsIHx8IG93bmVySW1wID09PSB0YXJnZXRJbXAgfHwKICAgICAg";
    encoded = encoded + "ICAgICAgICAgIG93bmVyV2luZG93ID09IG51bGwgfHwgdGFyZ2V0V2luZG93ID09IG51bGwgfHwgdGFyZ2V0Q2FudmFzID09IG51bGwgfHwKICAgICAgICAgICAgICAgIFdNLmdldEN1cnJlbnRJbWFnZSgpICE9PSBvd25lckltcCB8fAogICAgICAgICAgICAgICAgU3RyaW5nKFN5c3RlbS5pZGVudGl0eUhhc2hDb2Rl";
    encoded = encoded + "KG93bmVyV2luZG93KSkgIT09CiAgICAgICAgICAgICAgICAgICAgU3RyaW5nKG93bmVyV2luZG93SWRlbnRpdHkpIHx8CiAgICAgICAgICAgICAgICBTdHJpbmcoU3lzdGVtLmlkZW50aXR5SGFzaENvZGUodGFyZ2V0V2luZG93KSkgIT09CiAgICAgICAgICAgICAgICAgICAgU3RyaW5nKHRhcmdldFdpbmRvd0lkZW50";
    encoded = encoded + "aXR5KSB8fAogICAgICAgICAgICAgICAgIW93bmVyV2luZG93LmlzU2hvd2luZygpIHx8ICF0YXJnZXRXaW5kb3cuaXNTaG93aW5nKCkgfHwKICAgICAgICAgICAgICAgICF0YXJnZXRDYW52YXMuaXNTaG93aW5nKCkgfHwgIXRhcmdldENhbnZhcy5pc0VuYWJsZWQoKSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJy";
    encoded = encoded + "b3IoIkVWVDAwNl9CQVJSSUVSX0NPTlRFWFRfQ0hBTkdFRF9CRUZPUkVfQUNUSVZBVElPTiIpOwogICAgICAgIH0KICAgICAgICB0YXJnZXRXaW5kb3cudG9Gcm9udCgpOwogICAgICAgIHRhcmdldFdpbmRvdy5yZXF1ZXN0Rm9jdXMoKTsKICAgICAgICB0YXJnZXRXaW5kb3cuZGlzcGF0Y2hFdmVudCgKICAgICAgICAg";
    encoded = encoded + "ICAgbmV3IFdpbmRvd0V2ZW50KHRhcmdldFdpbmRvdywgV2luZG93RXZlbnQuV0lORE9XX0FDVElWQVRFRCkKICAgICAgICApOwogICAgICAgIFdNLnNldEN1cnJlbnRXaW5kb3codGFyZ2V0V2luZG93KTsKICAgICAgICBpZiAoV00uZ2V0Q3VycmVudEltYWdlKCkgIT09IHRhcmdldEltcCB8fAogICAgICAgICAgICAg";
    encoded = encoded + "ICAgdGFyZ2V0SW1wLmdldFdpbmRvdygpICE9PSB0YXJnZXRXaW5kb3cgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhTeXN0ZW0uaWRlbnRpdHlIYXNoQ29kZSh0YXJnZXRXaW5kb3cpKSAhPT0KICAgICAgICAgICAgICAgICAgICBTdHJpbmcodGFyZ2V0V2luZG93SWRlbnRpdHkpKSB7CiAgICAgICAgICAgIHRocm93";
    encoded = encoded + "IG5ldyBFcnJvcigiRVZUMDA2X0JBUlJJRVJfVEFSR0VUX05PVF9BQ1RJVkFURUQiKTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gYXdhaXRFdnQwMDZQcmVwYXJlU3dpdGNoKGNvbnRleHRKc29uKSB7CiAgICAgICAgdmFyIHJhd01hcmtlciA9IHJlZ2lzdHJ5R2V0KEVWVDAwNl9CQVJSSUVSX01BUktFUl9L";
    encoded = encoded + "RVkpOwogICAgICAgIHZhciBtYXJrZXI7CiAgICAgICAgdmFyIG93bmVyQ29udGV4dDsKICAgICAgICB2YXIgb3duZXJJbXA7CiAgICAgICAgdmFyIHRhcmdldEltcDsKICAgICAgICB2YXIgbGl2ZU93bmVyOwogICAgICAgIHZhciBzdGFydGVkOwogICAgICAgIHZhciBjb21wbGV0aW9uOwogICAgICAgIHZhciBnYXRl";
    encoded = encoded + "TG9jazsKICAgICAgICB2YXIgZ2F0ZTsKICAgICAgICB2YXIgd3JhcHBlcjsKICAgICAgICB2YXIgZGVhZGxpbmVOYW5vczsKICAgICAgICB2YXIgc3RhcnRlZEluVGltZTsKICAgICAgICB2YXIgY2FuY2VsbGVkOwogICAgICAgIHZhciBpbnRlcnJ1cHRlZDsKICAgICAgICB2YXIgdGVybWluYWxTdGF0dXM7CiAgICAg";
    encoded = encoded + "ICAgdmFyIHRlcm1pbmFsRmFpbHVyZTsKCiAgICAgICAgLy8gVGhpcyBpcyB0aGUgY29tcGxldGUgcHJvZHVjdGlvbiBmYXN0IHBhdGg6IG5vIG1hcmtlciBtZWFucyBubwogICAgICAgIC8vIHBhcnNpbmcsIG5vIGxvY2ssIG5vIEVEVCBkaXNwYXRjaCBhbmQgbm8gd2FpdC4KICAgICAgICBpZiAocmF3TWFya2VyID09";
    encoded = encoded + "IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuICJOT1RfQUNUSVZFIjsKICAgICAgICB9CgogICAgICAgIC8vIFByZXNlbmNlIGlzIG9uZS1zaG90IGV2ZW4gd2hlbiBtYWxmb3JtZWQuICBBbiBpbnZhbGlkIGhhcm5lc3MKICAgICAgICAvLyBtYXJrZXIgY2Fubm90IGxlYWsgaW50byBhIGxhdGVyIHNjaWVudGlmaWMg";
    encoded = encoded + "Y29tbWFuZC4KICAgICAgICByZWdpc3RyeVB1dChFVlQwMDZfQkFSUklFUl9NQVJLRVJfS0VZLCBudWxsKTsKCiAgICAgICAgZnVuY3Rpb24gZmFpbChjb2RlKSB7CiAgICAgICAgICAgIHJlZ2lzdHJ5UHV0KEVWVDAwNl9CQVJSSUVSX1NUQVRVU19LRVksICJFUlJPUnwiICsgU3RyaW5nKGNvZGUpKTsKICAgICAgICAg";
    encoded = encoded + "ICAgdGhyb3cgbmV3IEVycm9yKFN0cmluZyhjb2RlKSk7CiAgICAgICAgfQoKICAgICAgICB0cnkgewogICAgICAgICAgICBtYXJrZXIgPSBKU09OLnBhcnNlKFN0cmluZyhyYXdNYXJrZXIpKTsKICAgICAgICAgICAgZXhhY3RPYmplY3RLZXlzKG1hcmtlciwgWwogICAgICAgICAgICAgICAgInNjaGVtYSIsICJlbmFi";
    encoded = encoded + "bGVkIiwgImNhbXBhaWduX2lkIiwgImltcGxlbWVudGF0aW9uX2NvbW1pdCIsCiAgICAgICAgICAgICAgICAib3duZXJfaW1hZ2VwbHVzX2lkIiwgIm93bmVyX3dpbmRvd19pZGVudGl0eSIsCiAgICAgICAgICAgICAgICAidGFyZ2V0X2ltYWdlcGx1c19pZCIsICJ0YXJnZXRfd2luZG93X2lkZW50aXR5IiwgInRpbWVv";
    encoded = encoded + "dXRfbXMiCiAgICAgICAgICAgIF0sICJFVlQwMDZfQkFSUklFUl9NQVJLRVIiKTsKICAgICAgICB9IGNhdGNoIChpbnZhbGlkTWFya2VyKSB7CiAgICAgICAgICAgIGZhaWwoIkVWVDAwNl9CQVJSSUVSX0lOVkFMSURfTUFSS0VSIik7CiAgICAgICAgfQogICAgICAgIGlmIChtYXJrZXIuc2NoZW1hICE9PSBFVlQwMDZf";
    encoded = encoded + "QkFSUklFUl9TQ0hFTUEgfHwgbWFya2VyLmVuYWJsZWQgIT09IHRydWUgfHwKICAgICAgICAgICAgICAgICEvXlswLTlhLWZdezh9LVswLTlhLWZdezR9LTRbMC05YS1mXXszfS1bODlhYl1bMC05YS1mXXszfS1bMC05YS1mXXsxMn0kLy50ZXN0KAogICAgICAgICAgICAgICAgICAgIFN0cmluZyhtYXJrZXIuY2FtcGFp";
    encoded = encoded + "Z25faWQpCiAgICAgICAgICAgICAgICApIHx8CiAgICAgICAgICAgICAgICAhL15bMC05YS1mXXs0MH0kLy50ZXN0KFN0cmluZyhtYXJrZXIuaW1wbGVtZW50YXRpb25fY29tbWl0KSkgfHwKICAgICAgICAgICAgICAgICEvXlsxLTldWzAtOV0qJC8udGVzdChTdHJpbmcobWFya2VyLm93bmVyX2ltYWdlcGx1c19pZCkp";
    encoded = encoded + "IHx8CiAgICAgICAgICAgICAgICAhL15bMS05XVswLTldKiQvLnRlc3QoU3RyaW5nKG1hcmtlci50YXJnZXRfaW1hZ2VwbHVzX2lkKSkgfHwKICAgICAgICAgICAgICAgICEvXi0/WzAtOV0rJC8udGVzdChTdHJpbmcobWFya2VyLm93bmVyX3dpbmRvd19pZGVudGl0eSkpIHx8CiAgICAgICAgICAgICAgICAhL14tP1sw";
    encoded = encoded + "LTldKyQvLnRlc3QoU3RyaW5nKG1hcmtlci50YXJnZXRfd2luZG93X2lkZW50aXR5KSkgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhtYXJrZXIub3duZXJfaW1hZ2VwbHVzX2lkKSA9PT0gU3RyaW5nKG1hcmtlci50YXJnZXRfaW1hZ2VwbHVzX2lkKSB8fAogICAgICAgICAgICAgICAgU3RyaW5nKG1hcmtlci5vd25l";
    encoded = encoded + "cl93aW5kb3dfaWRlbnRpdHkpID09PQogICAgICAgICAgICAgICAgICAgIFN0cmluZyhtYXJrZXIudGFyZ2V0X3dpbmRvd19pZGVudGl0eSkgfHwKICAgICAgICAgICAgICAgIHR5cGVvZiBtYXJrZXIudGltZW91dF9tcyAhPT0gIm51bWJlciIgfHwKICAgICAgICAgICAgICAgICFpc0Zpbml0ZShtYXJrZXIudGltZW91";
    encoded = encoded + "dF9tcykgfHwKICAgICAgICAgICAgICAgIE1hdGguZmxvb3IobWFya2VyLnRpbWVvdXRfbXMpICE9PSBtYXJrZXIudGltZW91dF9tcyB8fAogICAgICAgICAgICAgICAgbWFya2VyLnRpbWVvdXRfbXMgIT09IEVWVDAwNl9CQVJSSUVSX1RJTUVPVVRfTVMgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhyYXdNYXJrZXIp";
    encoded = encoded + "ICE9PSBldnQwMDZCYXJyaWVyQ2Fub25pY2FsKG1hcmtlcikpIHsKICAgICAgICAgICAgZmFpbCgiRVZUMDA2X0JBUlJJRVJfSU5WQUxJRF9NQVJLRVIiKTsKICAgICAgICB9CiAgICAgICAgaWYgKCFldnQwMDZCYXJyaWVyVGVsZW1ldHJ5TWF0Y2hlcyhtYXJrZXIpKSB7CiAgICAgICAgICAgIGZhaWwoIkVWVDAwNl9C";
    encoded = encoded + "QVJSSUVSX0NBTVBBSUdOX0JJTkRJTkdfTUlTTUFUQ0giKTsKICAgICAgICB9CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgb3duZXJDb250ZXh0ID0gSlNPTi5wYXJzZShTdHJpbmcoY29udGV4dEpzb24pKTsKICAgICAgICAgICAgZXhhY3RPYmplY3RLZXlzKG93bmVyQ29udGV4dCwgWwogICAgICAgICAgICAgICAg";
    encoded = encoded + "InNjaGVtYSIsICJwcm9qZWN0X2lkIiwgInByb2plY3RfdWlkIiwgImltYWdlX2lkIiwgImltYWdlX3VpZCIsCiAgICAgICAgICAgICAgICAic291cmNlX3NoYTI1NiIsICJtYXN0ZXJfcGl4ZWxfc2hhMjU2IiwgImFuYWx5c2lzX3Nlc3Npb25faWQiLAogICAgICAgICAgICAgICAgImFuYWx5c2lzX3Nlc3Npb25fdWlk";
    encoded = encoded + "IiwgInJldmlzaW9uX2lkIiwgInJldmlzaW9uX3VpZCIsCiAgICAgICAgICAgICAgICAid29ya2luZ19zdGF0ZV9pZCIsICJzdGF0ZV9pZGVudGl0eSIsICJpbWFnZXBsdXNfaWRlbnRpdHkiLAogICAgICAgICAgICAgICAgIndpbmRvd19pZGVudGl0eSIsICJvYmplY3RfdXVpZCIsICJjYXZpdHlfaWQiLAogICAgICAg";
    encoded = encoded + "ICAgICAgICAgInNlbGVjdGlvbl9yZXZpc2lvbiIsICJnZW5lcmF0aW9uX3Rva2VuIiwgImNvbW1hbmRfaWQiLAogICAgICAgICAgICAgICAgImNvbnRleHRfZmluZ2VycHJpbnRfc2hhMjU2IgogICAgICAgICAgICBdLCAiRVZUMDA2X0JBUlJJRVJfT1dORVJfQ09OVEVYVCIpOwogICAgICAgIH0gY2F0Y2ggKGludmFs";
    encoded = encoded + "aWRDb250ZXh0KSB7CiAgICAgICAgICAgIGZhaWwoIkVWVDAwNl9CQVJSSUVSX0lOVkFMSURfT1dORVJfQ09OVEVYVCIpOwogICAgICAgIH0KICAgICAgICBpZiAob3duZXJDb250ZXh0LnNjaGVtYSAhPT0gIkNUTF9PUEVSQVRJT05fQ09OVEVYVF9WMSIgfHwKICAgICAgICAgICAgICAgIG93bmVyQ29udGV4dC5jb21t";
    encoded = encoded + "YW5kX2lkICE9PSAiZXhwb3J0X3J1biIgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhvd25lckNvbnRleHQuaW1hZ2VwbHVzX2lkZW50aXR5KSAhPT0KICAgICAgICAgICAgICAgICAgICBTdHJpbmcobWFya2VyLm93bmVyX2ltYWdlcGx1c19pZCkgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhvd25lckNvbnRleHQu";
    encoded = encoded + "d2luZG93X2lkZW50aXR5KSAhPT0KICAgICAgICAgICAgICAgICAgICBTdHJpbmcobWFya2VyLm93bmVyX3dpbmRvd19pZGVudGl0eSkgfHwKICAgICAgICAgICAgICAgICEvXlswLTlhLWZdezY0fSQvLnRlc3QoU3RyaW5nKG93bmVyQ29udGV4dC5jb250ZXh0X2ZpbmdlcnByaW50X3NoYTI1NikpIHx8CiAgICAgICAg";
    encoded = encoded + "ICAgICAgICBzaGEyNTZUZXh0KGNhbm9uaWNhbENvbnRleHRUZXh0KG93bmVyQ29udGV4dCkpICE9PQogICAgICAgICAgICAgICAgICAgIFN0cmluZyhvd25lckNvbnRleHQuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYpIHx8CiAgICAgICAgICAgICAgICB0b0NvbnRleHRKc29uKG93bmVyQ29udGV4dCkgIT09IFN0";
    encoded = encoded + "cmluZyhjb250ZXh0SnNvbikpIHsKICAgICAgICAgICAgZmFpbCgiRVZUMDA2X0JBUlJJRVJfSU5WQUxJRF9PV05FUl9DT05URVhUIik7CiAgICAgICAgfQogICAgICAgIG93bmVySW1wID0gV00uZ2V0SW1hZ2UoTnVtYmVyKG1hcmtlci5vd25lcl9pbWFnZXBsdXNfaWQpKTsKICAgICAgICB0YXJnZXRJbXAgPSBXTS5n";
    encoded = encoded + "ZXRJbWFnZShOdW1iZXIobWFya2VyLnRhcmdldF9pbWFnZXBsdXNfaWQpKTsKICAgICAgICBpZiAob3duZXJJbXAgPT0gbnVsbCB8fCB0YXJnZXRJbXAgPT0gbnVsbCB8fCBvd25lckltcCA9PT0gdGFyZ2V0SW1wIHx8CiAgICAgICAgICAgICAgICBvd25lckltcC5nZXRXaW5kb3coKSA9PSBudWxsIHx8IHRhcmdldElt";
    encoded = encoded + "cC5nZXRXaW5kb3coKSA9PSBudWxsIHx8CiAgICAgICAgICAgICAgICBTdHJpbmcoU3lzdGVtLmlkZW50aXR5SGFzaENvZGUob3duZXJJbXAuZ2V0V2luZG93KCkpKSAhPT0KICAgICAgICAgICAgICAgICAgICBTdHJpbmcobWFya2VyLm93bmVyX3dpbmRvd19pZGVudGl0eSkgfHwKICAgICAgICAgICAgICAgIFN0cmlu";
    encoded = encoded + "ZyhTeXN0ZW0uaWRlbnRpdHlIYXNoQ29kZSh0YXJnZXRJbXAuZ2V0V2luZG93KCkpKSAhPT0KICAgICAgICAgICAgICAgICAgICBTdHJpbmcobWFya2VyLnRhcmdldF93aW5kb3dfaWRlbnRpdHkpIHx8CiAgICAgICAgICAgICAgICBXTS5nZXRDdXJyZW50SW1hZ2UoKSAhPT0gb3duZXJJbXApIHsKICAgICAgICAgICAg";
    encoded = encoded + "ZmFpbCgiRVZUMDA2X0JBUlJJRVJfT1dORVJfVEFSR0VUX05PVF9SRUFEWSIpOwogICAgICAgIH0KICAgICAgICB0cnkgewogICAgICAgICAgICBsaXZlT3duZXIgPSBjYXB0dXJlKG93bmVySW1wLCBvd25lckNvbnRleHQuY29tbWFuZF9pZCk7CiAgICAgICAgfSBjYXRjaCAob3duZXJDYXB0dXJlRXJyb3IpIHsKICAg";
    encoded = encoded + "ICAgICAgICAgZmFpbCgiRVZUMDA2X0JBUlJJRVJfT1dORVJfQ09OVEVYVF9DSEFOR0VEIik7CiAgICAgICAgfQogICAgICAgIGlmIChsaXZlT3duZXIuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYgIT09CiAgICAgICAgICAgICAgICBvd25lckNvbnRleHQuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYpIHsKICAg";
    encoded = encoded + "ICAgICAgICAgZmFpbCgiRVZUMDA2X0JBUlJJRVJfT1dORVJfQ09OVEVYVF9DSEFOR0VEIik7CiAgICAgICAgfQogICAgICAgIGlmIChTd2luZ1V0aWxpdGllcy5pc0V2ZW50RGlzcGF0Y2hUaHJlYWQoKSkgewogICAgICAgICAgICBmYWlsKCJFVlQwMDZfQkFSUklFUl9XUk9OR19USFJFQUQiKTsKICAgICAgICB9Cgog";
    encoded = encoded + "ICAgICAgIHN0YXJ0ZWQgPSBuZXcgQ291bnREb3duTGF0Y2goMSk7CiAgICAgICAgY29tcGxldGlvbiA9IG5ldyBDb3VudERvd25MYXRjaCgxKTsKICAgICAgICBnYXRlTG9jayA9IG5ldyBSZWVudHJhbnRMb2NrKCk7CiAgICAgICAgZ2F0ZSA9IHtzdGF0dXM6ICJXQUlUSU5HIiwgZmFpbHVyZTogbnVsbH07CiAgICAg";
    encoded = encoded + "ICAgLy8gVGhpcyBtb25vdG9uaWMgZGVhZGxpbmUgaXMgZml4ZWQgYmVmb3JlIGRpc3BhdGNoLiAgRURUIGFuZCB3b3JrZXIKICAgICAgICAvLyBhcmJpdHJhdGUgYWdhaW5zdCB0aGlzIHNhbWUgdmFsdWUgd2hpbGUgaG9sZGluZyBnYXRlTG9jay4KICAgICAgICBkZWFkbGluZU5hbm9zID0gTnVtYmVyKFN5c3RlbS5u";
    encoded = encoded + "YW5vVGltZSgpKSArCiAgICAgICAgICAgIE51bWJlcihUaW1lVW5pdC5NSUxMSVNFQ09ORFMudG9OYW5vcyhtYXJrZXIudGltZW91dF9tcykpOwogICAgICAgIHdyYXBwZXIgPSBhZGFwdGVyKFJ1bm5hYmxlLCB7CiAgICAgICAgICAgIHJ1bjogZnVuY3Rpb24gKCkgewogICAgICAgICAgICAgICAgdmFyIHNob3VsZFJ1";
    encoded = encoded + "biA9IGV2dDAwNkNsYWltQmFycmllck9uRWR0KAogICAgICAgICAgICAgICAgICAgIGdhdGVMb2NrLCBnYXRlLCBkZWFkbGluZU5hbm9zCiAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgdmFyIGFjdGl2YXRpb25GYWlsdXJlID0gbnVsbDsKICAgICAgICAgICAgICAgIHN0YXJ0ZWQuY291bnREb3duKCk7";
    encoded = encoded + "CiAgICAgICAgICAgICAgICBpZiAoIXNob3VsZFJ1bikgewogICAgICAgICAgICAgICAgICAgIGNvbXBsZXRpb24uY291bnREb3duKCk7CiAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICBldnQwMDZBY3RpdmF0";
    encoded = encoded + "ZVRhcmdldE9uRWR0KAogICAgICAgICAgICAgICAgICAgICAgICBvd25lckltcCwgdGFyZ2V0SW1wLCBtYXJrZXIub3duZXJfd2luZG93X2lkZW50aXR5LAogICAgICAgICAgICAgICAgICAgICAgICBtYXJrZXIudGFyZ2V0X3dpbmRvd19pZGVudGl0eQogICAgICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgICAg";
    encoded = encoded + "ICB9IGNhdGNoIChhY3RpdmF0aW9uRXJyb3IpIHsKICAgICAgICAgICAgICAgICAgICBhY3RpdmF0aW9uRmFpbHVyZSA9IGFjdGl2YXRpb25FcnJvcjsKICAgICAgICAgICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICAgICAgZXZ0MDA2RmluaXNoQmFy";
    encoded = encoded + "cmllck9uRWR0KAogICAgICAgICAgICAgICAgICAgICAgICAgICAgZ2F0ZUxvY2ssIGdhdGUsIGFjdGl2YXRpb25GYWlsdXJlCiAgICAgICAgICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgICAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgICAgICAgICAgICAgY29tcGxldGlvbi5jb3VudERvd24oKTsK";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgIH0KICAgICAgICB9KTsKICAgICAgICByZWdpc3RyeVB1dChFVlQwMDZfQkFSUklFUl9TVEFUVVNfS0VZLCAiQVdBSVRJTkdfUFJFUEFSRV9TV0lUQ0giKTsKICAgICAgICB0cnkgewogICAgICAgICAgICBTd2luZ1V0aWxpdGll";
    encoded = encoded + "cy5pbnZva2VMYXRlcih3cmFwcGVyKTsKICAgICAgICB9IGNhdGNoIChkaXNwYXRjaEVycm9yKSB7CiAgICAgICAgICAgIGNhbmNlbGxlZCA9IGV2dDAwNkNhbmNlbEJhcnJpZXJJZldhaXRpbmcoCiAgICAgICAgICAgICAgICBnYXRlTG9jaywgZ2F0ZSwgZGVhZGxpbmVOYW5vcywgIkRJU1BBVENIX0ZBSUxFRCIsIHRy";
    encoded = encoded + "dWUKICAgICAgICAgICAgKTsKICAgICAgICAgICAgaWYgKCFjYW5jZWxsZWQpIHsKICAgICAgICAgICAgICAgIC8vIERlZmVuc2l2ZSBhZ2FpbnN0IGFuIGltcGxlbWVudGF0aW9uIHRoYXQgYm90aCBlbnF1ZXVlcyBhbmQKICAgICAgICAgICAgICAgIC8vIHJlcG9ydHMgZmFpbHVyZTogbmV2ZXIgcmV0dXJuIHdoaWxl";
    encoded = encoded + "IGl0cyBFRFQgYWN0aXZhdGlvbiBvd25zCiAgICAgICAgICAgICAgICAvLyBSVU5OSU5HLgogICAgICAgICAgICAgICAgZXZ0MDA2QXdhaXRCYXJyaWVyQ29tcGxldGlvbihjb21wbGV0aW9uKTsKICAgICAgICAgICAgfQogICAgICAgICAgICBmYWlsKCJFVlQwMDZfQkFSUklFUl9ESVNQQVRDSF9GQUlMRUQiKTsKICAg";
    encoded = encoded + "ICAgICB9CiAgICAgICAgaW50ZXJydXB0ZWQgPSBmYWxzZTsKICAgICAgICB0cnkgewogICAgICAgICAgICAvLyB0aW1lb3V0X21zIGlzIGEgZGVhZGxpbmUgdG8gU1RBUlQgb24gdGhlIEVEVCwgbm90IGEgZGVhZGxpbmUgdG8KICAgICAgICAgICAgLy8gZmluaXNoLiAgT25jZSBSVU5OSU5HIHdpbnMsIHRoZSBmaW5p";
    encoded = encoded + "dGUgaW50ZXJuYWwgYWN0aXZhdGlvbiBpcwogICAgICAgICAgICAvLyBqb2luZWQgYW5kIHZlcmlmaWVkIGJlZm9yZSB0aGlzIHdvcmtlciBjYW4gcmV0dXJuLgogICAgICAgICAgICBzdGFydGVkSW5UaW1lID0gc3RhcnRlZC5hd2FpdCgKICAgICAgICAgICAgICAgIG1hcmtlci50aW1lb3V0X21zLCBUaW1lVW5pdC5N";
    encoded = encoded + "SUxMSVNFQ09ORFMKICAgICAgICAgICAgKTsKICAgICAgICB9IGNhdGNoIChiYXJyaWVySW50ZXJydXB0ZWQpIHsKICAgICAgICAgICAgc3RhcnRlZEluVGltZSA9IGZhbHNlOwogICAgICAgICAgICBpbnRlcnJ1cHRlZCA9IHRydWU7CiAgICAgICAgfQogICAgICAgIGlmICghc3RhcnRlZEluVGltZSkgewogICAgICAg";
    encoded = encoded + "ICAgICBjYW5jZWxsZWQgPSBldnQwMDZDYW5jZWxCYXJyaWVySWZXYWl0aW5nKAogICAgICAgICAgICAgICAgZ2F0ZUxvY2ssIGdhdGUsIGRlYWRsaW5lTmFub3MsCiAgICAgICAgICAgICAgICBpbnRlcnJ1cHRlZCA/ICJDQU5DRUxMRURfSU5URVJSVVBURUQiIDoKICAgICAgICAgICAgICAgICAgICAiQ0FOQ0VMTEVE";
    encoded = encoded + "X1NUQVJUX1RJTUVPVVQiLAogICAgICAgICAgICAgICAgaW50ZXJydXB0ZWQKICAgICAgICAgICAgKTsKICAgICAgICAgICAgLy8gQXQgdGhlIGV4YWN0IGluY2x1c2l2ZSBib3VuZGFyeSB0aGUgRURUIGlzIHN0aWxsIGFsbG93ZWQgdG8KICAgICAgICAgICAgLy8gY2xhaW0uICBJZiBuZWl0aGVyIHNpZGUgaGFzIGFj";
    encoded = encoded + "cXVpcmVkIGdhdGVMb2NrIHlldCwgZ2l2ZSB0aGF0CiAgICAgICAgICAgIC8vIEludm9jYXRpb25FdmVudCBvbmUgbmFub3NlY29uZCBhbmQgYXJiaXRyYXRlIGFnYWluOyBhZnRlciB0aGUKICAgICAgICAgICAgLy8gYm91bmRhcnkgb25seSBjYW5jZWxsYXRpb24gY2FuIHdpbiBmcm9tIFdBSVRJTkcuCiAgICAgICAg";
    encoded = encoded + "ICAgIHdoaWxlICghY2FuY2VsbGVkICYmICFpbnRlcnJ1cHRlZCkgewogICAgICAgICAgICAgICAgZ2F0ZUxvY2subG9jaygpOwogICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICB0ZXJtaW5hbFN0YXR1cyA9IGdhdGUuc3RhdHVzOwogICAgICAgICAgICAgICAgfSBmaW5hbGx5IHsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICBnYXRlTG9jay51bmxvY2soKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGlmICh0ZXJtaW5hbFN0YXR1cyAhPT0gIldBSVRJTkciKSB7CiAgICAgICAgICAgICAgICAgICAgYnJlYWs7CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgIHN0YXJ0ZWQuYXdhaXQoMSwgVGltZVVuaXQuTkFOT1NFQ09ORFMpOwogICAgICAgICAgICAgICAgfSBjYXRjaCAoYm91bmRhcnlJbnRlcnJ1cHRlZCkgewogICAgICAgICAgICAgICAgICAgIGludGVycnVwdGVkID0gdHJ1ZTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGNhbmNlbGxl";
    encoded = encoded + "ZCA9IGV2dDAwNkNhbmNlbEJhcnJpZXJJZldhaXRpbmcoCiAgICAgICAgICAgICAgICAgICAgZ2F0ZUxvY2ssIGdhdGUsIGRlYWRsaW5lTmFub3MsCiAgICAgICAgICAgICAgICAgICAgaW50ZXJydXB0ZWQgPyAiQ0FOQ0VMTEVEX0lOVEVSUlVQVEVEIiA6CiAgICAgICAgICAgICAgICAgICAgICAgICJDQU5DRUxMRURf";
    encoded = encoded + "U1RBUlRfVElNRU9VVCIsCiAgICAgICAgICAgICAgICAgICAgaW50ZXJydXB0ZWQKICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKGNhbmNlbGxlZCkgewogICAgICAgICAgICAgICAgZmFpbChpbnRlcnJ1cHRlZCA/CiAgICAgICAgICAgICAgICAgICAgIkVWVDAwNl9CQVJSSUVS";
    encoded = encoded + "X0lOVEVSUlVQVEVEX0JFRk9SRV9TVEFSVCIgOgogICAgICAgICAgICAgICAgICAgICJFVlQwMDZfQkFSUklFUl9TVEFSVF9USU1FT1VUIik7CiAgICAgICAgICAgIH0KICAgICAgICB9CiAgICAgICAgLy8gQSBib3VuZGFyeSByYWNlIG1heSBtYWtlIGF3YWl0KHRpbWVvdXQpIHJlcG9ydCBmYWxzZSBqdXN0IGFmdGVy";
    encoded = encoded + "IHRoZQogICAgICAgIC8vIEVEVCBjaGFuZ2VkIFdBSVRJTkcgdG8gUlVOTklORy4gIENhbmNlbGxhdGlvbiB0aGVuIGxvc2VzLCBhbmQgdGhpcwogICAgICAgIC8vIHVuY29uZGl0aW9uYWwgam9pbiBwcmV2ZW50cyBhIHBhcmFsbGVsIHRlcm1pbmFsIG9yIGxhdGUgbXV0YXRpb24uCiAgICAgICAgaWYgKGV2dDAwNkF3";
    encoded = encoded + "YWl0QmFycmllckNvbXBsZXRpb24oY29tcGxldGlvbikpIHsKICAgICAgICAgICAgaW50ZXJydXB0ZWQgPSB0cnVlOwogICAgICAgIH0KICAgICAgICBnYXRlTG9jay5sb2NrKCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgdGVybWluYWxTdGF0dXMgPSBnYXRlLnN0YXR1czsKICAgICAgICAgICAgdGVybWluYWxG";
    encoded = encoded + "YWlsdXJlID0gZ2F0ZS5mYWlsdXJlOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIGdhdGVMb2NrLnVubG9jaygpOwogICAgICAgIH0KICAgICAgICBpZiAoaW50ZXJydXB0ZWQpIHsKICAgICAgICAgICAgZmFpbCgiRVZUMDA2X0JBUlJJRVJfSU5URVJSVVBURURfQUZURVJfU1RBUlQiKTsKICAgICAgICB9";
    encoded = encoded + "CiAgICAgICAgaWYgKHRlcm1pbmFsU3RhdHVzID09PSAiQ0FOQ0VMTEVEX1NUQVJUX1RJTUVPVVQiKSB7CiAgICAgICAgICAgIGZhaWwoIkVWVDAwNl9CQVJSSUVSX1NUQVJUX1RJTUVPVVQiKTsKICAgICAgICB9CiAgICAgICAgaWYgKHRlcm1pbmFsU3RhdHVzICE9PSAiU1VDQ0VFREVEIiB8fCB0ZXJtaW5hbEZhaWx1";
    encoded = encoded + "cmUgIT0gbnVsbCB8fAogICAgICAgICAgICAgICAgV00uZ2V0Q3VycmVudEltYWdlKCkgIT09IHRhcmdldEltcCB8fAogICAgICAgICAgICAgICAgdGFyZ2V0SW1wLmdldFdpbmRvdygpID09IG51bGwgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhTeXN0ZW0uaWRlbnRpdHlIYXNoQ29kZSh0YXJnZXRJbXAuZ2V0V2lu";
    encoded = encoded + "ZG93KCkpKSAhPT0KICAgICAgICAgICAgICAgICAgICBTdHJpbmcobWFya2VyLnRhcmdldF93aW5kb3dfaWRlbnRpdHkpKSB7CiAgICAgICAgICAgIGZhaWwoIkVWVDAwNl9CQVJSSUVSX0FDVElWQVRJT05fRkFJTEVEIik7CiAgICAgICAgfQogICAgICAgIHJlZ2lzdHJ5UHV0KEVWVDAwNl9CQVJSSUVSX1NUQVRVU19L";
    encoded = encoded + "RVksICJTVUNDRVNTIik7CiAgICAgICAgcmV0dXJuICJTV0lUQ0hfVkVSSUZJRUQiOwogICAgfQoKICAgIGZ1bmN0aW9uIHF1ZXVlRm9yKGltcCkgewogICAgICAgIHZhciBzdGF0ZSA9IHJlZ2lzdHJ5R2V0KFNUQVRFX0tFWSk7CiAgICAgICAgdmFyIHRocmVhZEZhY3Rvcnk7CiAgICAgICAgaWYgKHN0YXRlICE9IG51";
    encoded = encoded + "bGwpIHsKICAgICAgICAgICAgaWYgKHN0YXRlLmNsb3NlZCA9PT0gdHJ1ZSkgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJRVUVVRV9TVEFURV9DTE9TRUQiKTsKICAgICAgICAgICAgfQogICAgICAgICAgICByZXR1cm4gc3RhdGU7CiAgICAgICAgfQogICAgICAgIHN0YXRlID0gewogICAgICAgICAg";
    encoded = encoded + "ICBjbG9zZWQ6IGZhbHNlLAogICAgICAgICAgICBsaXN0ZW5lcnM6IFtdLAogICAgICAgICAgICB0aW1lcnM6IFtdLAogICAgICAgICAgICBwZW5kaW5nUm9sbGJhY2tPd25lcjogbnVsbCwKICAgICAgICAgICAgcGVuZGluZ1NuYXBzaG90OiBudWxsLAogICAgICAgICAgICBwZW5kaW5nUmVxdWVzdElkOiBudWxsLAog";
    encoded = encoded + "ICAgICAgICAgICBwZW5kaW5nVHJhbnNhY3Rpb25JZDogbnVsbCwKICAgICAgICAgICAgcGVuZGluZ0RldGFpbENvZGU6IG51bGwsCiAgICAgICAgICAgIGluRmxpZ2h0Um9sbGJhY2tPd25lcnM6IFtdLAogICAgICAgICAgICBxdWV1ZVNsb3RzOiBbXSwKICAgICAgICAgICAgbGlzdGVuZXJHZW5lcmF0aW9uOiBpbWFn";
    encoded = encoded + "ZVByb3BlcnR5KGltcCwgIkNUTC5QMS5nZW5lcmF0aW9uX3Rva2VuIiwgIjAiKSwKICAgICAgICAgICAgaW1hZ2VMaXN0ZW5lcjogbnVsbCwKICAgICAgICAgICAgZXhlY3V0b3I6IG51bGwKICAgICAgICB9OwogICAgICAgIHRocmVhZEZhY3RvcnkgPSBhZGFwdGVyKFRocmVhZEZhY3RvcnksIHsKICAgICAgICAgICAg";
    encoded = encoded + "bmV3VGhyZWFkOiBmdW5jdGlvbiAocnVubmFibGUpIHsKICAgICAgICAgICAgICAgIHZhciB0aHJlYWQgPSBuZXcgamF2YS5sYW5nLlRocmVhZChydW5uYWJsZSwgIkNUTC1QMS1TZXJpYWxDb21tYW5kUXVldWUtIiArIGltcC5nZXRJRCgpKTsKICAgICAgICAgICAgICAgIHRocmVhZC5zZXREYWVtb24odHJ1ZSk7CiAg";
    encoded = encoded + "ICAgICAgICAgICAgICByZXR1cm4gdGhyZWFkOwogICAgICAgICAgICB9CiAgICAgICAgfSk7CiAgICAgICAgc3RhdGUuZXhlY3V0b3IgPSBFeGVjdXRvcnMubmV3U2luZ2xlVGhyZWFkRXhlY3V0b3IodGhyZWFkRmFjdG9yeSk7CiAgICAgICAgcmVnaXN0cnlQdXQoU1RBVEVfS0VZLCBzdGF0ZSk7CiAgICAgICAgcmV0";
    encoded = encoded + "dXJuIHN0YXRlOwogICAgfQoKICAgIGZ1bmN0aW9uIHNuYXBzaG90UGVuZGluZ1JvbGxiYWNrKHN0YXRlKSB7CiAgICAgICAgcnVudGltZVN0YXRlTG9jay5sb2NrKCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgcmV0dXJuIHsKICAgICAgICAgICAgICAgIG93bmVyOiBzdGF0ZS5wZW5kaW5nUm9sbGJhY2tPd25l";
    encoded = encoded + "ciwKICAgICAgICAgICAgICAgIHNuYXBzaG90OiBzdGF0ZS5wZW5kaW5nU25hcHNob3QsCiAgICAgICAgICAgICAgICByZXF1ZXN0X2lkOiBzdGF0ZS5wZW5kaW5nUmVxdWVzdElkLAogICAgICAgICAgICAgICAgdHJhbnNhY3Rpb25faWQ6IHN0YXRlLnBlbmRpbmdUcmFuc2FjdGlvbklkLAogICAgICAgICAgICAgICAg";
    encoded = encoded + "ZGV0YWlsX2NvZGU6IHN0YXRlLnBlbmRpbmdEZXRhaWxDb2RlCiAgICAgICAgICAgIH07CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gc2V0UGVuZGluZ1JvbGxiYWNrKHN0YXRlLCBvd25lciwgc25hcHNo";
    encoded = encoded + "b3QsIHJlcXVlc3RJZCwgdHJhbnNhY3Rpb25JZCwgZGV0YWlsQ29kZSkgewogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGlmIChzdGF0ZS5jbG9zZWQgPT09IHRydWUpIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUVVFVUVfU1RBVEVfQ0xP";
    encoded = encoded + "U0VEIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKG93bmVyID09IG51bGwgfHwgc25hcHNob3QgPT0gbnVsbCB8fAogICAgICAgICAgICAgICAgICAgIChzdGF0ZS5wZW5kaW5nUm9sbGJhY2tPd25lciAhPSBudWxsICYmCiAgICAgICAgICAgICAgICAgICAgIHN0YXRlLnBlbmRpbmdSb2xsYmFja093bmVy";
    encoded = encoded + "ICE9PSBvd25lcikpIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUEVORElOR19ST0xMQkFDS19UUkFOU0ZFUl9JTlZBTElEIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgc3RhdGUucGVuZGluZ1JvbGxiYWNrT3duZXIgPSBvd25lcjsKICAgICAgICAgICAgc3RhdGUucGVuZGluZ1NuYXBzaG90";
    encoded = encoded + "ID0gc25hcHNob3Q7CiAgICAgICAgICAgIHN0YXRlLnBlbmRpbmdSZXF1ZXN0SWQgPSBTdHJpbmcocmVxdWVzdElkKTsKICAgICAgICAgICAgc3RhdGUucGVuZGluZ1RyYW5zYWN0aW9uSWQgPSBTdHJpbmcodHJhbnNhY3Rpb25JZCk7CiAgICAgICAgICAgIHN0YXRlLnBlbmRpbmdEZXRhaWxDb2RlID0gU3RyaW5nKGRl";
    encoded = encoded + "dGFpbENvZGUpOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIGhhc0luRmxpZ2h0Um9sbGJhY2tPd25lcnMoc3RhdGUpIHsKICAgICAgICBydW50aW1lU3RhdGVMb2NrLmxvY2soKTsKICAgICAgICB0cnkg";
    encoded = encoded + "ewogICAgICAgICAgICByZXR1cm4gc3RhdGUuaW5GbGlnaHRSb2xsYmFja093bmVycy5sZW5ndGggPiAwOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIHN1Ym1pdChzbmFwc2hvdCwgY29tbWFuZCwgbWFj";
    encoded = encoded + "cm9OYW1lLCB1c2VFZHQsIHJvbGxiYWNrT3duZXIsIGNvcnJlbGF0aW9uKSB7CiAgICAgICAgdmFyIHN0YXRlOwogICAgICAgIHZhciBxdWV1ZVNsb3QgPSBudWxsOwogICAgICAgIHZhciBmdXR1cmUgPSBudWxsOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIHN0YXRlID0gcXVldWVGb3Ioc25hcHNob3QuaW1wKTsK";
    encoded = encoded + "ICAgICAgICB9IGNhdGNoIChxdWV1ZVN0YXRlRXJyb3IpIHsKICAgICAgICAgICAgaWYgKHJvbGxiYWNrT3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgc2V0dGxlUm9sbGJhY2tPd25lcihyb2xsYmFja093bmVyLCAiUVVFVUVfU1RBVEVfQUNRVUlTSVRJT05fRkFJTEVEIik7CiAgICAgICAgICAgIH0KICAg";
    encoded = encoded + "ICAgICAgICAgdGhyb3cgcXVldWVTdGF0ZUVycm9yOwogICAgICAgIH0KICAgICAgICAvLyBFeGVjdXRvclNlcnZpY2Uuc3VibWl0IG1heSBzdGFydCB0aGUgUnVubmFibGUgYmVmb3JlIHN1Ym1pdCByZXR1cm5zLgogICAgICAgIC8vIFByZXNlcnZlIHRoZSBjb250cmFjdHVhbCBwZW5kaW5nLT5pbi1mbGlnaHQgaGFu";
    encoded = encoded + "ZC1vZmYgKG9ubHkgYWZ0ZXIgdGhlCiAgICAgICAgLy8gZXhlY3V0b3IgYWNjZXB0cyB0aGUgdGFzaykgYW5kIGFsbCBxdWV1ZSBib29ra2VlcGluZyB3aGlsZSBwcmV2ZW50aW5nCiAgICAgICAgLy8gdGhlIHdvcmtlciBmcm9tIHJhY2luZyBhaGVhZCBvZiBGdXR1cmUgY3VzdG9keS9vd25lciB0cmFuc2Zlci4KICAg";
    encoded = encoded + "ICAgICB2YXIgb3duZXJzaGlwVHJhbnNmZXJHYXRlID0gbmV3IENvdW50RG93bkxhdGNoKDEpOwogICAgICAgIHZhciB0YXNrQWNjZXB0ZWQgPSBmYWxzZTsKICAgICAgICB2YXIgcmVxdWVzdElkID0gY29ycmVsYXRpb24gPT0gbnVsbCA/IHRlbGVtZXRyeUlkKCkgOiBTdHJpbmcoY29ycmVsYXRpb24ucmVxdWVzdF9p";
    encoded = encoded + "ZCk7CiAgICAgICAgdmFyIHRyYW5zYWN0aW9uSWQgPSBjb3JyZWxhdGlvbiA9PSBudWxsID8gdGVsZW1ldHJ5SWQoKSA6IFN0cmluZyhjb3JyZWxhdGlvbi50cmFuc2FjdGlvbl9pZCk7CiAgICAgICAgdmFyIGxpc3RlbmVyR2VuZXJhdGlvbiA9IGNvcnJlbGF0aW9uID09IG51bGwgPyBudWxsIDogU3RyaW5nKGNvcnJl";
    encoded = encoded + "bGF0aW9uLmxpc3RlbmVyX2dlbmVyYXRpb24pOwogICAgICAgIHZhciBvcGVyYXRpb24gPSB0ZWxlbWV0cnlPcGVyYXRpb24oY29tbWFuZCArICIgIiArIG1hY3JvTmFtZSk7CiAgICAgICAgaWYgKHJlcXVlc3RJZCA9PT0gdHJhbnNhY3Rpb25JZCB8fAogICAgICAgICAgICAgICAgIS9eWzAtOWEtZl17OH0tWzAtOWEt";
    encoded = encoded + "Zl17NH0tNFswLTlhLWZdezN9LVs4OWFiXVswLTlhLWZdezN9LVswLTlhLWZdezEyfSQvLnRlc3QocmVxdWVzdElkKSB8fAogICAgICAgICAgICAgICAgIS9eWzAtOWEtZl17OH0tWzAtOWEtZl17NH0tNFswLTlhLWZdezN9LVs4OWFiXVswLTlhLWZdezN9LVswLTlhLWZdezEyfSQvLnRlc3QodHJhbnNhY3Rpb25JZCkg";
    encoded = encoded + "fHwKICAgICAgICAgICAgICAgIChjb3JyZWxhdGlvbiAhPSBudWxsICYmICEvXlsxLTldWzAtOV0qJC8udGVzdChsaXN0ZW5lckdlbmVyYXRpb24pKSkgewogICAgICAgICAgICBpZiAocm9sbGJhY2tPd25lciAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKHJvbGxiYWNrT3duZXIs";
    encoded = encoded + "ICJJTlZBTElEX0NPTU1BTkRfQ09SUkVMQVRJT04iKTsKICAgICAgICAgICAgfQogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVkFMSURfQ09NTUFORF9DT1JSRUxBVElPTiIpOwogICAgICAgIH0KICAgICAgICBpZiAocm9sbGJhY2tPd25lciAhPSBudWxsICYmICFyb2xsYmFja093bmVyTWF0Y2hlc1NuYXBz";
    encoded = encoded + "aG90KHJvbGxiYWNrT3duZXIsIHNuYXBzaG90KSkgewogICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKHJvbGxiYWNrT3duZXIsICJST0xMQkFDS19PV05FUl9TTkFQU0hPVF9NSVNNQVRDSCIpOwogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlJPTExCQUNLX09XTkVSX1NOQVBTSE9UX01JU01BVENIIik7";
    encoded = encoded + "CiAgICAgICAgfQogICAgICAgIHZhciB0YXNrID0gYWRhcHRlcihSdW5uYWJsZSwgewogICAgICAgICAgICBydW46IGZ1bmN0aW9uICgpIHsKICAgICAgICAgICAgICAgIHZhciBmaW5hbFN0YXR1cyA9ICJTVUNDRUVERUQiOwogICAgICAgICAgICAgICAgdmFyIGZpbmFsRGV0YWlsID0gIkNPTU1BTkRfQ09NUExFVEVE";
    encoded = encoded + "IjsKICAgICAgICAgICAgICAgIHZhciBzdGFydGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICB2YXIgbG9ja0hlbGQgPSBmYWxzZTsKICAgICAgICAgICAgICAgIHZhciBjb21tYW5kRXhlY3V0ZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgIHZhciBzdGFsZUNvbnRleHQgPSBmYWxzZTsKICAgICAgICAgICAgICAg";
    encoded = encoded + "IHZhciBjb21taXRQcmVwYXJlZCA9IGZhbHNlOwogICAgICAgICAgICAgICAgdmFyIHRlcm1pbmFsUmVjb3JkZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgIHZhciBjbGVhbnVwRmFpbHVyZSA9IG51bGw7CiAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgIGF3YWl0UXVldWVPd25lcnNoaXBU";
    encoded = encoded + "cmFuc2ZlcigKICAgICAgICAgICAgICAgICAgICAgICAgc3RhdGUsIHF1ZXVlU2xvdCwgb3duZXJzaGlwVHJhbnNmZXJHYXRlLCByb2xsYmFja093bmVyCiAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgICAgICBydW50aW1lV3JpdGVyTG9jay5sb2NrSW50ZXJydXB0aWJseSgpOwogICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgIGxvY2tIZWxkID0gdHJ1ZTsKICAgICAgICAgICAgICAgICAgICBiZWdpblF1ZXVlU2xvdFdyaXRlcihzdGF0ZSwgcXVldWVTbG90KTsKICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlSZWNvcmQoewogICAgICAgICAgICAgICAgICAgICAgICBldmVudF90eXBlOiAiQ09NTUFORF9TVEFSVEVEIiwg";
    encoded = encoded + "aW1wOiBzbmFwc2hvdC5pbXAsCiAgICAgICAgICAgICAgICAgICAgICAgIG93bmVyX2NvbnRleHQ6IHNuYXBzaG90LCByZXF1ZXN0X2lkOiByZXF1ZXN0SWQsCiAgICAgICAgICAgICAgICAgICAgICAgIHRyYW5zYWN0aW9uX2lkOiB0cmFuc2FjdGlvbklkLCBvcGVyYXRpb246IG9wZXJhdGlvbiwKICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgbGlzdGVuZXJfZ2VuZXJhdGlvbjogbGlzdGVuZXJHZW5lcmF0aW9uLAogICAgICAgICAgICAgICAgICAgICAgICBwaGFzZTogIkRJU1BBVENIRUQiLCBzdGF0dXM6ICJTVEFSVEVEIiwKICAgICAgICAgICAgICAgICAgICAgICAgZGV0YWlsX2NvZGU6ICJTRVJJQUxfV1JJVEVSX1NUQVJURUQiLCBx";
    encoded = encoded + "dWV1ZV9zbG90OiBxdWV1ZVNsb3QKICAgICAgICAgICAgICAgICAgICB9KTsKICAgICAgICAgICAgICAgICAgICBzdGFydGVkID0gdHJ1ZTsKICAgICAgICAgICAgICAgICAgICByZWdpc3RyeVB1dChBQ1RJVkVfUkVRVUVTVF9LRVksIHJlcXVlc3RJZCk7CiAgICAgICAgICAgICAgICAgICAgcmVnaXN0cnlQdXQoQUNU";
    encoded = encoded + "SVZFX1RSQU5TQUNUSU9OX0tFWSwgdHJhbnNhY3Rpb25JZCk7CiAgICAgICAgICAgICAgICAgICAgc3RhbGVDb250ZXh0ID0gc3RhdGUuY2xvc2VkOwogICAgICAgICAgICAgICAgICAgIGlmICghc3RhbGVDb250ZXh0ICYmIGNvbW1hbmQgPT09ICJJTlRFUkFDVElWRV9FRElUIikgewogICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICBpZiAoV00uZ2V0Q3VycmVudEltYWdlKCkgIT09IHNuYXBzaG90LmltcCkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgc3RhbGVDb250ZXh0ID0gdHJ1ZTsKICAgICAgICAgICAgICAgICAgICAgICAgfSBlbHNlIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIG9uRWR0QW5kV2FpdChmdW5jdGlv";
    encoded = encoded + "biAoKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgY29tbWFuZEV4ZWN1dGVkID0gZXhlY3V0ZUJvdW5kSW50ZXJhY3RpdmVFZGl0KAogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICBzdGF0ZSwgcm9sbGJhY2tPd25lciwgc25hcHNob3QsIG1hY3JvTmFtZQogICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgaWYgKGNvbW1hbmRFeGVjdXRlZCAmJiByb2xsYmFja093bmVyICE9IG51bGwgJiYKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICFhZG9wdE93bmVkUm9sbGJhY2tDb250ZXh0KHJvbGxiYWNrT3duZXIp";
    encoded = encoded + "KSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiT1dORURfUE9TVF9DT01NQU5EX0NPTlRFWFRfSU5WQUxJRCIpOwogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0pOwogICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgc3RhbGVDb250ZXh0ID0gIWNvbW1hbmRFeGVjdXRlZDsKICAgICAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIH0gZWxzZSBpZiAoIXN0YWxlQ29udGV4dCkgewogICAgICAgICAgICAgICAgICAgICAgICBzdGFsZUNvbnRleHQgPSAhc2FtZUNvbnRleHQoc25hcHNob3QpOwog";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICBpZiAoc3RhbGVDb250ZXh0KSB7CiAgICAgICAgICAgICAgICAgICAgICAgIGZpbmFsU3RhdHVzID0gIkNBTkNFTExFRCI7CiAgICAgICAgICAgICAgICAgICAgICAgIGZpbmFsRGV0YWlsID0gIlNUQUxFX0NPTlRFWFRfQ0FOQ0VMTEVEIjsKICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgaWYgKHJvbGxiYWNrT3duZXIgIT0gbnVsbCAmJgogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICFzZXR0bGVSb2xsYmFja093bmVyKHJvbGxiYWNrT3duZXIsICJTVEFMRV9DT05URVhUIikpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGZpbmFsU3RhdHVzID0g";
    encoded = encoded + "IkZBSUxFRCI7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBmaW5hbERldGFpbCA9ICJTVEFMRV9DT05URVhUX1JPTExCQUNLX0ZBSUxFRCI7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBzbmFwc2hvdC5pbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50IiwgIkNPTU1BTkRfRkFJTEVEIik7CiAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgICAgICBzbmFwc2hvdC5pbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50X2RldGFpbCIsIGZpbmFsRGV0YWlsKTsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIElKLmxvZygiQ1RMIFAxIHJvbGxiYWNrIGZhaWxlZDogIiArIGZpbmFsRGV0YWlsKTsKICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgIHJldHVybjsKICAgICAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgICAgICBhdWRpdFN0YWxlKHNuYXBzaG90LCBjb21tYW5kKTsKICAgICAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICBpZiAoY29tbWFuZEV4ZWN1dGVkKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIC8vIFRoZSBVVUlELWJvdW5kIGVkaXQgd2FzIGV4ZWN1dGVkIGF0b21pY2FsbHkgb24gdGhlIEVEVAogICAgICAgICAgICAgICAgICAgICAgICAvLyBhbmQgdGhlIG9wZXJhdG9yJ3MgbGl2ZSBzZWxlY3Rpb24gd2FzIHJlc3RvcmVk";
    encoded = encoded + "LgogICAgICAgICAgICAgICAgICAgIH0gZWxzZSBpZiAodXNlRWR0KSB7CiAgICAgICAgICAgICAgICAgICAgICAgIG9uRWR0QW5kV2FpdChmdW5jdGlvbiAoKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBuZXcgRXhlY3V0ZXIobWFjcm9OYW1lKS5ydW4oKTsKICAgICAgICAgICAgICAgICAgICAgICAgfSk7";
    encoded = encoded + "CiAgICAgICAgICAgICAgICAgICAgfSBlbHNlIHsKICAgICAgICAgICAgICAgICAgICAgICAgbmV3IEV4ZWN1dGVyKG1hY3JvTmFtZSkucnVuKCk7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgfSBjYXRjaCAoZXJyb3IpIHsKICAgICAgICAgICAgICAgICAgICBmaW5hbFN0YXR1cyA9ICJGQUlM";
    encoded = encoded + "RUQiOwogICAgICAgICAgICAgICAgICAgIGZpbmFsRGV0YWlsID0gIkNPTU1BTkRfRVhFQ1VUSU9OX0ZBSUxFRCI7CiAgICAgICAgICAgICAgICAgICAgaWYgKHJvbGxiYWNrT3duZXIgIT0gbnVsbCAmJiByb2xsYmFja093bmVyTmVlZHNTZXR0bGVtZW50KHJvbGxiYWNrT3duZXIpKSB7CiAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBvbkVkdEFuZFdhaXQoZnVuY3Rpb24gKCkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIGFkb3B0T3duZWRSb2xsYmFja0NvbnRleHQocm9sbGJhY2tPd25lcik7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICB9KTsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgfSBjYXRjaCAoaWdub3JlZE93bmVkQ29udGV4dENhcHR1cmUpIHt9CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIGlmIChyb2xsYmFja093bmVyICE9IG51bGwgJiYKICAgICAgICAgICAgICAgICAgICAgICAgICAgICFzZXR0bGVSb2xsYmFja093bmVyKHJv";
    encoded = encoded + "bGxiYWNrT3duZXIsICJDT01NQU5EX0VYRUNVVElPTl9GQUlMRUQiKSkgewogICAgICAgICAgICAgICAgICAgICAgICBmaW5hbERldGFpbCA9ICJDT01NQU5EX0VYRUNVVElPTl9ST0xMQkFDS19GQUlMRUQiOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICBzbmFwc2hvdC5pbXAuc2V0UHJv";
    encoded = encoded + "cGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50IiwgIkNPTU1BTkRfRkFJTEVEIik7CiAgICAgICAgICAgICAgICAgICAgc25hcHNob3QuaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGFzdF9ldmVudF9kZXRhaWwiLCBmaW5hbERldGFpbCk7CiAgICAgICAgICAgICAgICAgICAgSUoubG9nKCJDVEwgUDEgY29tbWFuZCBmYWls";
    encoded = encoded + "ZWQgIiArIGNvbW1hbmQgKyAiOiAiICsgZXJyb3IpOwogICAgICAgICAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgICAgICBpZiAoZmluYWxTdGF0dXMgIT09ICJTVUNDRUVERUQiICYmIHJvbGxiYWNrT3duZXIgIT0gbnVsbCAmJgogICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgIHJvbGxiYWNrT3duZXJOZWVkc1NldHRsZW1lbnQocm9sbGJhY2tPd25lcikgJiYKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAhc2V0dGxlUm9sbGJhY2tPd25lcihyb2xsYmFja093bmVyLCBmaW5hbERldGFpbCkpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "IGZpbmFsU3RhdHVzID0gIkZBSUxFRCI7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBmaW5hbERldGFpbCA9ICJDT01NQU5EX1JPTExCQUNLX0ZBSUxFRCI7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgaWYgKGZpbmFsU3RhdHVzID09PSAiU1VDQ0VFREVEIiAmJiBy";
    encoded = encoded + "b2xsYmFja093bmVyICE9IG51bGwpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGNvbW1pdFByZXBhcmVkID0gYmVnaW5Sb2xsYmFja0NvbW1pdChyb2xsYmFja093bmVyKTsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGlmICghY29tbWl0UHJlcGFyZWQpIHsKICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICBmaW5hbFN0YXR1cyA9ICJGQUlMRUQiOwogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIGZpbmFsRGV0YWlsID0gIlJPTExCQUNLX09XTkVSU0hJUF9MT1NUIjsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICBpZiAoc3RhcnRlZCkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlSZWNvcmQoewogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICBldmVudF90eXBlOiAiQ09NTUFORF9GSU5JU0hFRCIsIGltcDogc25h";
    encoded = encoded + "cHNob3QuaW1wLAogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICBvd25lcl9jb250ZXh0OiBzbmFwc2hvdCwgcmVxdWVzdF9pZDogcmVxdWVzdElkLAogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICB0cmFuc2FjdGlvbl9pZDogdHJhbnNhY3Rpb25JZCwgb3BlcmF0aW9uOiBvcGVyYXRp";
    encoded = encoded + "b24sCiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIGxpc3RlbmVyX2dlbmVyYXRpb246IGxpc3RlbmVyR2VuZXJhdGlvbiwKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgcGhhc2U6ICJDT01QTEVURSIsIHN0YXR1czogZmluYWxTdGF0dXMsCiAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgIGRldGFpbF9jb2RlOiBmaW5hbERldGFpbCwgcXVldWVfc2xvdDogcXVldWVTbG90CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgfSk7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgdGVybWluYWxSZWNvcmRlZCA9IHRydWU7CiAgICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICB9IGNhdGNoICh0ZXJtaW5hbFRlbGVtZXRyeUVycm9yKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgaWYgKGNvbW1pdFByZXBhcmVkKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIGNhbmNlbFJvbGxiYWNrQ29tbWl0KHJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICBjb21taXRQcmVwYXJlZCA9IGZhbHNlOwogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICBpZiAocm9sbGJhY2tPd25lciAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIHNldHRs";
    encoded = encoded + "ZVJvbGxiYWNrT3duZXIoCiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICByb2xsYmFja093bmVyLCAiQ09NTUFORF9URVJNSU5BTF9URUxFTUVUUllfRkFJTEVEIgogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0K";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICBzbmFwc2hvdC5pbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50IiwgIkNPTU1BTkRfRkFJTEVEIik7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgc25hcHNob3QuaW1wLnNldFByb3BlcnR5KAogICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAiQ1RMLlAxLmxhc3RfZXZlbnRfZGV0YWlsIiwKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIkNPTU1BTkRfVEVSTUlOQUxfVEVMRU1FVFJZX0ZBSUxFRCIKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIElK";
    encoded = encoded + "LmxvZygiQ1RMIFAxIHRlcm1pbmFsIHRlbGVtZXRyeSBmYWlsZWQ6ICIgKyB0ZXJtaW5hbFRlbGVtZXRyeUVycm9yKTsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgICAgICBpZiAoY29tbWl0UHJlcGFyZWQgJiYgdGVybWluYWxS";
    encoded = encoded + "ZWNvcmRlZCkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgZmluaXNoUm9sbGJhY2tDb21taXQocm9sbGJhY2tPd25lcik7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB9IGZpbmFsbHkgewogICAgICAgICAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgcmVsZWFzZVJvbGxiYWNrT3duZXIoc3RhdGUsIHJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgICAgICB9IGNhdGNoIChvd25lclJlbGVhc2VFcnJvcikgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgY2xlYW51cEZhaWx1cmUgPSBvd25lclJlbGVhc2VFcnJvcjsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgc2V0dGxlUXVldWVTbG90QWNjb3VudGluZyhzdGF0ZSwgcXVldWVTbG90LCBmaW5hbERldGFpbCk7CiAgICAgICAgICAgICAgICAgICAgICAgIH0gY2F0Y2ggKHF1ZXVlQ2xlYW51";
    encoded = encoded + "cEVycm9yKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBjbGVhbnVwRmFpbHVyZSA9IHF1ZXVlQ2xlYW51cEVycm9yOwogICAgICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgICAgIGlmIChsb2NrSGVsZCkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgdHJ5IHsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgICAgICBydW50aW1lV3JpdGVyTG9jay51bmxvY2soKTsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0gY2F0Y2ggKHdyaXRlclVubG9ja0Vycm9yKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgY2xlYW51cEZhaWx1cmUgPSB3cml0ZXJVbmxvY2tFcnJvcjsK";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgICAgICBpZiAoU3RyaW5nKHJlZ2lzdHJ5R2V0KEFDVElWRV9SRVFVRVNUX0tFWSkpID09PSByZXF1ZXN0SWQpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIHJlZ2lzdHJ5UHV0";
    encoded = encoded + "KEFDVElWRV9SRVFVRVNUX0tFWSwgbnVsbCk7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgaWYgKFN0cmluZyhyZWdpc3RyeUdldChBQ1RJVkVfVFJBTlNBQ1RJT05fS0VZKSkgPT09IHRyYW5zYWN0aW9uSWQpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIHJlZ2lz";
    encoded = encoded + "dHJ5UHV0KEFDVElWRV9UUkFOU0FDVElPTl9LRVksIG51bGwpOwogICAgICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgICAgIGlmIChjbGVhbnVwRmFpbHVyZSAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgIHF1YXJhbnRpbmVSb2xsYmFjaygKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgcm9sbGJhY2tPd25lciB8fCB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICBpbXA6IHNuYXBzaG90LmltcCwgZXhwZWN0ZWRfc25hcHNob3Q6IHNuYXBzaG90CiAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgIH0sCiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICJRVUVVRV9BQ0NPVU5USU5HX1NFVFRMRU1FTlRfRkFJTEVEIgogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICB9IGNhdGNoIChpZ25vcmVkQ2xl";
    encoded = encoded + "YW51cFF1YXJhbnRpbmVGYWlsdXJlKSB7fQogICAgICAgICAgICAgICAgICAgICAgICAgICAgSUoubG9nKCJDVEwgUDEgcXVldWUgY2xlYW51cCBmYWlsZWQ6ICIgKyBjbGVhbnVwRmFpbHVyZSk7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICB9CiAg";
    encoded = encoded + "ICAgICAgICAgIH0KICAgICAgICB9KTsKICAgICAgICB0cnkgewogICAgICAgICAgICAvLyBBY2NlcHRhbmNlLCBGdXR1cmUgY3VzdG9keSBhbmQgcm9sbGJhY2stb3duZXIgdHJhbnNmZXIgYXJlIG9uZQogICAgICAgICAgICAvLyBhdG9taWMgdHJhbnNpdGlvbiByZWxhdGl2ZSB0byB0ZWFyZG93bi4gIGxvY2soKSBp";
    encoded = encoded + "cyBpbnRlbnRpb25hbDoKICAgICAgICAgICAgLy8gaW50ZXJydXB0aW9uIGNhbm5vdCBzdHJhbmQgYSBwcmUtY29tbWFuZCBzY2llbnRpZmljIG11dGF0aW9uLgogICAgICAgICAgICBydW50aW1lU3RhdGVMb2NrLmxvY2soKTsKICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgIGlmIChzdGF0ZS5jbG9zZWQg";
    encoded = encoded + "PT09IHRydWUpIHsKICAgICAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlFVRVVFX1NUQVRFX0NMT1NFRCIpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgcXVldWVTbG90ID0gY3JlYXRlUXVldWVTbG90TG9ja2VkKHN0YXRlLCByb2xsYmFja093bmVyLCByZXF1ZXN0SWQpOwogICAgICAg";
    encoded = encoded + "ICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlSZWNvcmQoewogICAgICAgICAgICAgICAgICAgICAgICBldmVudF90eXBlOiAiQ09NTUFORF9FTlFVRVVFRCIsIGltcDogc25hcHNob3QuaW1wLAogICAgICAgICAgICAgICAgICAgICAgICBvd25lcl9jb250ZXh0OiBzbmFwc2hvdCwgcmVx";
    encoded = encoded + "dWVzdF9pZDogcmVxdWVzdElkLAogICAgICAgICAgICAgICAgICAgICAgICB0cmFuc2FjdGlvbl9pZDogdHJhbnNhY3Rpb25JZCwgb3BlcmF0aW9uOiBvcGVyYXRpb24sCiAgICAgICAgICAgICAgICAgICAgICAgIGxpc3RlbmVyX2dlbmVyYXRpb246IGxpc3RlbmVyR2VuZXJhdGlvbiwKICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgcGhhc2U6ICJTQ0hFRFVMRUQiLCBzdGF0dXM6ICJTRVJJQUxJWkVEIiwKICAgICAgICAgICAgICAgICAgICAgICAgZGV0YWlsX2NvZGU6ICJTRVJJQUxfUVVFVUVfQUNDRVBURUQiLCBxdWV1ZV9zbG90OiBxdWV1ZVNsb3QKICAgICAgICAgICAgICAgICAgICB9KTsKICAgICAgICAgICAgICAgIH0gY2F0Y2gg";
    encoded = encoded + "KGVucXVldWVUZWxlbWV0cnlFcnJvcikgewogICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigKICAgICAgICAgICAgICAgICAgICAgICAgIkNPTU1BTkRfRU5RVUVVRV9URUxFTUVUUllfRkFJTEVEOiIgKyBlbnF1ZXVlVGVsZW1ldHJ5RXJyb3IKICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAg";
    encoded = encoded + "ICAgICAgfQogICAgICAgICAgICAgICAgZnV0dXJlID0gc3RhdGUuZXhlY3V0b3Iuc3VibWl0KHRhc2spOwogICAgICAgICAgICAgICAgcXVldWVTbG90LmZ1dHVyZSA9IGZ1dHVyZTsKICAgICAgICAgICAgICAgIHF1ZXVlU2xvdC5hY2NlcHRlZCA9IHRydWU7CiAgICAgICAgICAgICAgICB0YXNrQWNjZXB0ZWQgPSB0";
    encoded = encoded + "cnVlOwogICAgICAgICAgICAgICAgaWYgKHJvbGxiYWNrT3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgIHRyYW5zZmVyUm9sbGJhY2tPd25lcihzdGF0ZSwgcm9sbGJhY2tPd25lcik7CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgICAgICBydW50aW1l";
    encoded = encoded + "U3RhdGVMb2NrLnVubG9jaygpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIG93bmVyc2hpcFRyYW5zZmVyR2F0ZS5jb3VudERvd24oKTsKICAgICAgICB9IGNhdGNoIChzdWJtaXRFcnJvcikgewogICAgICAgICAgICB2YXIgc2V0dGxlbWVudFJlYXNvbiA9IHRhc2tBY2NlcHRlZCA/CiAgICAgICAgICAgICAgICAi";
    encoded = encoded + "Uk9MTEJBQ0tfT1dORVJTSElQX1RSQU5TRkVSX0ZBSUxFRCIgOgogICAgICAgICAgICAgICAgKFN0cmluZyhzdWJtaXRFcnJvcikuaW5kZXhPZigiQ09NTUFORF9FTlFVRVVFX1RFTEVNRVRSWV9GQUlMRUQiKSA+PSAwID8KICAgICAgICAgICAgICAgICAgICAiQ09NTUFORF9FTlFVRVVFX1RFTEVNRVRSWV9GQUlMRUQi";
    encoded = encoded + "IDogIkVYRUNVVE9SX1NVQk1JVF9SRUpFQ1RFRCIpOwogICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgaWYgKHF1ZXVlU2xvdCAhPSBudWxsICYmICF0YXNrQWNjZXB0ZWQpIHsKICAgICAgICAgICAgICAgICAgICBzZXR0bGVRdWV1ZVNsb3RBY2NvdW50aW5nKAogICAgICAgICAgICAgICAgICAgICAgICBz";
    encoded = encoded + "dGF0ZSwgcXVldWVTbG90LCBzZXR0bGVtZW50UmVhc29uCiAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGlmIChyb2xsYmFja093bmVyICE9IG51bGwpIHsKICAgICAgICAgICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKHJvbGxiYWNrT3duZXIsIHNldHRs";
    encoded = encoded + "ZW1lbnRSZWFzb24pOwogICAgICAgICAgICAgICAgICAgIGNsZWFyUGVuZGluZ1JvbGxiYWNrKHN0YXRlLCByb2xsYmFja093bmVyKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgICAgIG93bmVyc2hpcFRyYW5zZmVyR2F0ZS5jb3VudERvd24oKTsKICAgICAgICAg";
    encoded = encoded + "ICAgfQogICAgICAgICAgICB0aHJvdyBzdWJtaXRFcnJvcjsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIHJlcXVlc3RJZDsKICAgIH0KCiAgICBmdW5jdGlvbiBidW1wQ291bnRlcihpbXAsIGtleSkgewogICAgICAgIHZhciBjdXJyZW50ID0gcGFyc2VJbnQoaW1hZ2VQcm9wZXJ0eShpbXAsIGtleSwgIjAiKSwgMTAp";
    encoded = encoded + "OwogICAgICAgIGlmICghaXNGaW5pdGUoY3VycmVudCkgfHwgY3VycmVudCA8IDApIHsKICAgICAgICAgICAgY3VycmVudCA9IDA7CiAgICAgICAgfQogICAgICAgIGN1cnJlbnQgKz0gMTsKICAgICAgICBpbXAuc2V0UHJvcGVydHkoa2V5LCBTdHJpbmcoY3VycmVudCkpOwogICAgICAgIHJldHVybiBjdXJyZW50Owog";
    encoded = encoded + "ICAgfQoKICAgIGZ1bmN0aW9uIHJvaVV1aWQocm9pKSB7CiAgICAgICAgdmFyIHByaW1hcnkgPSByb2lQcm9wZXJ0eShyb2ksIFsiT2JqZWN0X3V1aWQiXSwgIiIpOwogICAgICAgIHZhciBhbGlhcyA9IHJvaVByb3BlcnR5KHJvaSwgWyJvYmplY3RfdXVpZCJdLCAiIik7CiAgICAgICAgaWYgKHByaW1hcnkgIT09ICIi";
    encoded = encoded + "ICYmIGFsaWFzICE9PSAiIiAmJiBwcmltYXJ5ICE9PSBhbGlhcykgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVEVSQUNUSVZFX1RBUkdFVF9VVUlEX0RJVkVSR0VOVCIpOwogICAgICAgIH0KICAgICAgICByZXR1cm4gcHJpbWFyeSAhPT0gIiIgPyBwcmltYXJ5IDogKGFsaWFzICE9PSAiIiA/IGFsaWFz";
    encoded = encoded + "IDogIk5PVF9BUFBMSUNBQkxFIik7CiAgICB9CgogICAgZnVuY3Rpb24gcm9pU3RhdGVTaGEyNTYocm9pKSB7CiAgICAgICAgdmFyIGJ5dGVzOwogICAgICAgIGlmIChyb2kgPT0gbnVsbCkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlJPSV9TVEFURV9BQlNFTlQiKTsKICAgICAgICB9CiAgICAgICAgdHJ5";
    encoded = encoded + "IHsKICAgICAgICAgICAgYnl0ZXMgPSBSb2lFbmNvZGVyLnNhdmVBc0J5dGVBcnJheShyb2kpOwogICAgICAgIH0gY2F0Y2ggKHNlcmlhbGl6YXRpb25GYWlsdXJlKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUk9JX1NUQVRFX1NFUklBTElaQVRJT05fRkFJTEVEIik7CiAgICAgICAgfQogICAgICAgIGlm";
    encoded = encoded + "IChieXRlcyA9PSBudWxsIHx8IGJ5dGVzLmxlbmd0aCA8IDY0KSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUk9JX1NUQVRFX1NFUklBTElaQVRJT05fRkFJTEVEIik7CiAgICAgICAgfQogICAgICAgIHJldHVybiBzaGEyNTZCeXRlcyhieXRlcyk7CiAgICB9CgogICAgZnVuY3Rpb24gY3JlYXRlUm9sbGJh";
    encoded = encoded + "Y2tPd25lcihpbXAsIHV1aWQsIGNsb25lLCBpbmRleCwgZXhwZWN0ZWRTbmFwc2hvdCkgewogICAgICAgIHZhciBtYW5hZ2VyID0gUm9pTWFuYWdlci5nZXRJbnN0YW5jZTIoKTsKICAgICAgICB2YXIgbWFuYWdlclJvaTsKICAgICAgICB2YXIgaW1hZ2VSb2k7CiAgICAgICAgdmFyIGJhc2VsaW5lU3RhdGU7CiAgICAg";
    encoded = encoded + "ICAgdmFyIGxpdmVTbmFwc2hvdDsKICAgICAgICBpZiAoY2xvbmUgPT0gbnVsbCB8fCBpbXAgPT0gbnVsbCB8fCBtYW5hZ2VyID09IG51bGwgfHwgZXhwZWN0ZWRTbmFwc2hvdCA9PSBudWxsIHx8CiAgICAgICAgICAgICAgICBleHBlY3RlZFNuYXBzaG90LmltcCAhPT0gaW1wIHx8IHV1aWQgPT0gbnVsbCB8fCBTdHJp";
    encoded = encoded + "bmcodXVpZCkgPT09ICIiIHx8CiAgICAgICAgICAgICAgICBTdHJpbmcodXVpZCkgPT09ICJOT1RfQVBQTElDQUJMRSIgfHwgcm9pVXVpZChjbG9uZSkgIT09IFN0cmluZyh1dWlkKSB8fAogICAgICAgICAgICAgICAgaW5kZXggPCAwIHx8IG1hbmFnZXIuZ2V0U2VsZWN0ZWRJbmRleCgpICE9PSBpbmRleCB8fAogICAg";
    encoded = encoded + "ICAgICAgICAgICAgdW5pcXVlUm9pSW5kZXgobWFuYWdlciwgU3RyaW5nKHV1aWQpKSAhPT0gaW5kZXgpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJST0xMQkFDS19CQVNFTElORV9VTlZFUklGSUVEIik7CiAgICAgICAgfQogICAgICAgIG1hbmFnZXJSb2kgPSBtYW5hZ2VyLmdldFJvaShpbmRleCk7CiAg";
    encoded = encoded + "ICAgICAgaW1hZ2VSb2kgPSBpbXAuZ2V0Um9pKCk7CiAgICAgICAgYmFzZWxpbmVTdGF0ZSA9IHJvaVN0YXRlU2hhMjU2KGNsb25lKTsKICAgICAgICBpZiAocm9pVXVpZChtYW5hZ2VyUm9pKSAhPT0gU3RyaW5nKHV1aWQpIHx8IHJvaVV1aWQoaW1hZ2VSb2kpICE9PSBTdHJpbmcodXVpZCkgfHwKICAgICAgICAgICAg";
    encoded = encoded + "ICAgIHJvaVN0YXRlU2hhMjU2KG1hbmFnZXJSb2kpICE9PSBiYXNlbGluZVN0YXRlIHx8CiAgICAgICAgICAgICAgICByb2lTdGF0ZVNoYTI1NihpbWFnZVJvaSkgIT09IGJhc2VsaW5lU3RhdGUpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJST0xMQkFDS19CQVNFTElORV9OT1RfRVhBQ1QiKTsKICAgICAg";
    encoded = encoded + "ICB9CiAgICAgICAgbGl2ZVNuYXBzaG90ID0gY2FwdHVyZShpbXAsIGV4cGVjdGVkU25hcHNob3QuY29tbWFuZF9pZCwgdHJ1ZSk7CiAgICAgICAgaWYgKGxpdmVTbmFwc2hvdC5jb250ZXh0X2ZpbmdlcnByaW50X3NoYTI1NiAhPT0KICAgICAgICAgICAgICAgIGV4cGVjdGVkU25hcHNob3QuY29udGV4dF9maW5nZXJw";
    encoded = encoded + "cmludF9zaGEyNTYpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJST0xMQkFDS19CQVNFTElORV9DT05URVhUX01JU01BVENIIik7CiAgICAgICAgfQogICAgICAgIHJldHVybiB7CiAgICAgICAgICAgIGltcDogaW1wLAogICAgICAgICAgICB1dWlkOiBTdHJpbmcodXVpZCksCiAgICAgICAgICAgIGNsb25l";
    encoded = encoded + "OiBjbG9uZSwKICAgICAgICAgICAgaW5kZXg6IE51bWJlcihpbmRleCksCiAgICAgICAgICAgIGNvdW50OiBOdW1iZXIobWFuYWdlci5nZXRDb3VudCgpKSwKICAgICAgICAgICAgYmFzZWxpbmVfc3RhdGVfc2hhMjU2OiBiYXNlbGluZVN0YXRlLAogICAgICAgICAgICBleHBlY3RlZF9zZWxlY3Rpb25fcmV2aXNpb246";
    encoded = encoded + "IFN0cmluZyhleHBlY3RlZFNuYXBzaG90LnNlbGVjdGlvbl9yZXZpc2lvbiksCiAgICAgICAgICAgIGV4cGVjdGVkX2dlbmVyYXRpb25fdG9rZW46IFN0cmluZyhleHBlY3RlZFNuYXBzaG90LmdlbmVyYXRpb25fdG9rZW4pLAogICAgICAgICAgICBleHBlY3RlZF9jb250ZXh0X3NoYTI1NjogU3RyaW5nKGV4cGVjdGVk";
    encoded = encoded + "U25hcHNob3QuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYpLAogICAgICAgICAgICBleHBlY3RlZF9jb21tYW5kX2lkOiBTdHJpbmcoZXhwZWN0ZWRTbmFwc2hvdC5jb21tYW5kX2lkKSwKICAgICAgICAgICAgZXhwZWN0ZWRfc25hcHNob3Q6IGV4cGVjdGVkU25hcHNob3QsCiAgICAgICAgICAgIHN0YXR1czogIlBF";
    encoded = encoded + "TkRJTkciLAogICAgICAgICAgICB0cmFuc2ZlcnJlZDogZmFsc2UsCiAgICAgICAgICAgIGZhaWx1cmVfcmVhc29uOiBudWxsLAogICAgICAgICAgICByb2xsYmFja19pbnRlcm5hbF9zdWJjb2RlOiBudWxsCiAgICAgICAgfTsKICAgIH0KCiAgICBmdW5jdGlvbiByb2xsYmFja093bmVyQ29udGV4dE1hdGNoZXMob3du";
    encoded = encoded + "ZXIpIHsKICAgICAgICB2YXIgbGl2ZTsKICAgICAgICBpZiAob3duZXIgPT0gbnVsbCB8fCBvd25lci5pbXAgPT0gbnVsbCB8fAogICAgICAgICAgICAgICAgKG93bmVyLnN0YXR1cyAhPT0gIlBFTkRJTkciICYmIG93bmVyLnN0YXR1cyAhPT0gIlJPTExJTkdfQkFDSyIpKSB7CiAgICAgICAgICAgIHJldHVybiBmYWxz";
    encoded = encoded + "ZTsKICAgICAgICB9CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgbGl2ZSA9IGNhcHR1cmUob3duZXIuaW1wLCBvd25lci5leHBlY3RlZF9jb21tYW5kX2lkLCB0cnVlKTsKICAgICAgICAgICAgcmV0dXJuIGxpdmUuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYgPT09IG93bmVyLmV4cGVjdGVkX2NvbnRleHRfc2hh";
    encoded = encoded + "MjU2ICYmCiAgICAgICAgICAgICAgICBsaXZlLnNlbGVjdGlvbl9yZXZpc2lvbiA9PT0gb3duZXIuZXhwZWN0ZWRfc2VsZWN0aW9uX3JldmlzaW9uICYmCiAgICAgICAgICAgICAgICBsaXZlLmdlbmVyYXRpb25fdG9rZW4gPT09IG93bmVyLmV4cGVjdGVkX2dlbmVyYXRpb25fdG9rZW4gJiYKICAgICAgICAgICAgICAg";
    encoded = encoded + "IGxpdmUub2JqZWN0X3V1aWQgPT09IG93bmVyLnV1aWQ7CiAgICAgICAgfSBjYXRjaCAoaWdub3JlZE93bmVyQ29udGV4dCkgewogICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIHVwZGF0ZVJvbGxiYWNrT3duZXIob3duZXIsIGV4cGVjdGVkU25hcHNob3QpIHsKICAg";
    encoded = encoded + "ICAgICB2YXIgcHJldmlvdXNSZXZpc2lvbjsKICAgICAgICB2YXIgbmV4dFJldmlzaW9uOwogICAgICAgIHZhciBsaXZlOwogICAgICAgIGlmIChvd25lciA9PSBudWxsIHx8IGV4cGVjdGVkU25hcHNob3QgPT0gbnVsbCB8fCBvd25lci5zdGF0dXMgIT09ICJQRU5ESU5HIiB8fAogICAgICAgICAgICAgICAgZXhwZWN0";
    encoded = encoded + "ZWRTbmFwc2hvdC5pbXAgIT09IG93bmVyLmltcCB8fAogICAgICAgICAgICAgICAgU3RyaW5nKGV4cGVjdGVkU25hcHNob3Qub2JqZWN0X3V1aWQpICE9PSBvd25lci51dWlkIHx8CiAgICAgICAgICAgICAgICBTdHJpbmcoZXhwZWN0ZWRTbmFwc2hvdC5nZW5lcmF0aW9uX3Rva2VuKSAhPT0gb3duZXIuZXhwZWN0ZWRf";
    encoded = encoded + "Z2VuZXJhdGlvbl90b2tlbikgewogICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAgICAgIHByZXZpb3VzUmV2aXNpb24gPSBwYXJzZUludChvd25lci5leHBlY3RlZF9zZWxlY3Rpb25fcmV2aXNpb24sIDEwKTsKICAgICAgICBuZXh0UmV2aXNpb24gPSBwYXJzZUludChleHBlY3RlZFNuYXBzaG90";
    encoded = encoded + "LnNlbGVjdGlvbl9yZXZpc2lvbiwgMTApOwogICAgICAgIGlmICghaXNGaW5pdGUocHJldmlvdXNSZXZpc2lvbikgfHwgIWlzRmluaXRlKG5leHRSZXZpc2lvbikgfHwKICAgICAgICAgICAgICAgIG5leHRSZXZpc2lvbiAhPT0gcHJldmlvdXNSZXZpc2lvbiArIDEpIHsKICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwog";
    encoded = encoded + "ICAgICAgIH0KICAgICAgICB0cnkgewogICAgICAgICAgICBsaXZlID0gY2FwdHVyZShvd25lci5pbXAsIGV4cGVjdGVkU25hcHNob3QuY29tbWFuZF9pZCwgdHJ1ZSk7CiAgICAgICAgfSBjYXRjaCAoaWdub3JlZFVwZGF0ZUNvbnRleHQpIHsKICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0KICAgICAg";
    encoded = encoded + "ICBpZiAobGl2ZS5jb250ZXh0X2ZpbmdlcnByaW50X3NoYTI1NiAhPT0KICAgICAgICAgICAgICAgIGV4cGVjdGVkU25hcHNob3QuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYpIHsKICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0KICAgICAgICAvLyBUaGUgb2xkZXN0IGJ5dGUtZXhhY3QgYmFzZWxp";
    encoded = encoded + "bmUgaXMgZGVsaWJlcmF0ZWx5IHJldGFpbmVkIGFjcm9zcwogICAgICAgIC8vIGRlYm91bmNlIHJlc3RhcnRzOyBvbmx5IHRoZSBsYXN0IGNoYW5nZSBvd25lZCBieSB0aGlzIGludGVyYWN0aW9uCiAgICAgICAgLy8gYWR2YW5jZXMgdGhlIG1vbm90b25pYyBleHBlY3RlZCBjb250ZXh0LgogICAgICAgIG93bmVyLmV4";
    encoded = encoded + "cGVjdGVkX3NlbGVjdGlvbl9yZXZpc2lvbiA9IFN0cmluZyhleHBlY3RlZFNuYXBzaG90LnNlbGVjdGlvbl9yZXZpc2lvbik7CiAgICAgICAgb3duZXIuZXhwZWN0ZWRfY29udGV4dF9zaGEyNTYgPSBTdHJpbmcoZXhwZWN0ZWRTbmFwc2hvdC5jb250ZXh0X2ZpbmdlcnByaW50X3NoYTI1Nik7CiAgICAgICAgb3duZXIu";
    encoded = encoded + "ZXhwZWN0ZWRfY29tbWFuZF9pZCA9IFN0cmluZyhleHBlY3RlZFNuYXBzaG90LmNvbW1hbmRfaWQpOwogICAgICAgIG93bmVyLmV4cGVjdGVkX3NuYXBzaG90ID0gZXhwZWN0ZWRTbmFwc2hvdDsKICAgICAgICByZXR1cm4gdHJ1ZTsKICAgIH0KCiAgICBmdW5jdGlvbiBhZG9wdE93bmVkUm9sbGJhY2tDb250ZXh0KG93";
    encoded = encoded + "bmVyKSB7CiAgICAgICAgdmFyIGxpdmU7CiAgICAgICAgdmFyIHByZXZpb3VzUmV2aXNpb247CiAgICAgICAgdmFyIG5leHRSZXZpc2lvbjsKICAgICAgICBpZiAob3duZXIgPT0gbnVsbCB8fCBvd25lci5zdGF0dXMgIT09ICJQRU5ESU5HIikgewogICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAg";
    encoded = encoded + "ICAgIHRyeSB7CiAgICAgICAgICAgIGxpdmUgPSBjYXB0dXJlKG93bmVyLmltcCwgb3duZXIuZXhwZWN0ZWRfY29tbWFuZF9pZCwgdHJ1ZSk7CiAgICAgICAgfSBjYXRjaCAoaWdub3JlZE93bmVkQ29udGV4dCkgewogICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAgICAgIHByZXZpb3VzUmV2aXNp";
    encoded = encoded + "b24gPSBwYXJzZUludChvd25lci5leHBlY3RlZF9zZWxlY3Rpb25fcmV2aXNpb24sIDEwKTsKICAgICAgICBuZXh0UmV2aXNpb24gPSBwYXJzZUludChsaXZlLnNlbGVjdGlvbl9yZXZpc2lvbiwgMTApOwogICAgICAgIGlmICghaXNGaW5pdGUocHJldmlvdXNSZXZpc2lvbikgfHwgIWlzRmluaXRlKG5leHRSZXZpc2lv";
    encoded = encoded + "bikgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhsaXZlLmdlbmVyYXRpb25fdG9rZW4pICE9PSBvd25lci5leHBlY3RlZF9nZW5lcmF0aW9uX3Rva2VuIHx8CiAgICAgICAgICAgICAgICBTdHJpbmcobGl2ZS5vYmplY3RfdXVpZCkgIT09IG93bmVyLnV1aWQgfHwKICAgICAgICAgICAgICAgIG5leHRSZXZpc2lvbiA8";
    encoded = encoded + "IHByZXZpb3VzUmV2aXNpb24gfHwgbmV4dFJldmlzaW9uID4gcHJldmlvdXNSZXZpc2lvbiArIDEpIHsKICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0KICAgICAgICBpZiAobmV4dFJldmlzaW9uID09PSBwcmV2aW91c1JldmlzaW9uICYmCiAgICAgICAgICAgICAgICBsaXZlLmNvbnRleHRfZmluZ2Vy";
    encoded = encoded + "cHJpbnRfc2hhMjU2ICE9PSBvd25lci5leHBlY3RlZF9jb250ZXh0X3NoYTI1NikgewogICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAgICAgIGlmIChuZXh0UmV2aXNpb24gPT09IHByZXZpb3VzUmV2aXNpb24gKyAxKSB7CiAgICAgICAgICAgIG93bmVyLmV4cGVjdGVkX3NlbGVjdGlvbl9yZXZp";
    encoded = encoded + "c2lvbiA9IFN0cmluZyhsaXZlLnNlbGVjdGlvbl9yZXZpc2lvbik7CiAgICAgICAgICAgIG93bmVyLmV4cGVjdGVkX2NvbnRleHRfc2hhMjU2ID0gU3RyaW5nKGxpdmUuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYpOwogICAgICAgICAgICBvd25lci5leHBlY3RlZF9zbmFwc2hvdCA9IGxpdmU7CiAgICAgICAgfQog";
    encoded = encoded + "ICAgICAgIHJldHVybiB0cnVlOwogICAgfQoKICAgIGZ1bmN0aW9uIHJvbGxiYWNrT3duZXJNYXRjaGVzU25hcHNob3Qob3duZXIsIHNuYXBzaG90KSB7CiAgICAgICAgcmV0dXJuIG93bmVyICE9IG51bGwgJiYgc25hcHNob3QgIT0gbnVsbCAmJiBvd25lci5zdGF0dXMgPT09ICJQRU5ESU5HIiAmJgogICAgICAgICAg";
    encoded = encoded + "ICBvd25lci5pbXAgPT09IHNuYXBzaG90LmltcCAmJiBvd25lci51dWlkID09PSBTdHJpbmcoc25hcHNob3Qub2JqZWN0X3V1aWQpICYmCiAgICAgICAgICAgIG93bmVyLmV4cGVjdGVkX3NlbGVjdGlvbl9yZXZpc2lvbiA9PT0gU3RyaW5nKHNuYXBzaG90LnNlbGVjdGlvbl9yZXZpc2lvbikgJiYKICAgICAgICAgICAg";
    encoded = encoded + "b3duZXIuZXhwZWN0ZWRfZ2VuZXJhdGlvbl90b2tlbiA9PT0gU3RyaW5nKHNuYXBzaG90LmdlbmVyYXRpb25fdG9rZW4pICYmCiAgICAgICAgICAgIG93bmVyLmV4cGVjdGVkX2NvbnRleHRfc2hhMjU2ID09PSBTdHJpbmcoc25hcHNob3QuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYpICYmCiAgICAgICAgICAgIG93";
    encoded = encoded + "bmVyLmV4cGVjdGVkX2NvbW1hbmRfaWQgPT09IFN0cmluZyhzbmFwc2hvdC5jb21tYW5kX2lkKTsKICAgIH0KCiAgICBmdW5jdGlvbiBxdWFyYW50aW5lUm9sbGJhY2sob3duZXIsIHJlYXNvbiwgaW50ZXJuYWxTdWJjb2RlKSB7CiAgICAgICAgdmFyIGltcCA9IG93bmVyID09IG51bGwgPyBudWxsIDogb3duZXIuaW1w";
    encoded = encoded + "OwogICAgICAgIHZhciBkZXRhaWwgPSAiUk9MTEJBQ0tfUVVBUkFOVElORUQiOwogICAgICAgIHZhciBleGFjdFN1YmNvZGUgPSBkaWFnbm9zdGljU3ViY29kZSgKICAgICAgICAgICAgaW50ZXJuYWxTdWJjb2RlLCBkaWFnbm9zdGljU3ViY29kZShyZWFzb24sICJST0xMQkFDS19GQUlMVVJFX1VOQ0xBU1NJRklFRCIp";
    encoded = encoded + "CiAgICAgICAgKTsKICAgICAgICBpZiAoaW1wID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuOwogICAgICAgIH0KICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5yb2xsYmFja19xdWFyYW50aW5lIiwgIkFDVElWRSIpOwogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLnJvbGxiYWNrX3F1YXJh";
    encoded = encoded + "bnRpbmVfcmVhc29uIiwgU3RyaW5nKHJlYXNvbikpOwogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLnJvbGxiYWNrX3F1YXJhbnRpbmVfaW50ZXJuYWxfc3ViY29kZSIsIGV4YWN0U3ViY29kZSk7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGFzdF9ldmVudCIsICJDT01NQU5EX0ZBSUxFRCIp";
    encoded = encoded + "OwogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnRfZGV0YWlsIiwgZGV0YWlsKTsKICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50X2ludGVybmFsX2RldGFpbCIsIGV4YWN0U3ViY29kZSk7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGFzdF9ldmVu";
    encoded = encoded + "dF9tdXRhdGlvbnMiLCAiVU5LTk9XTl9GQUlMX0NMT1NFRCIpOwogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnRfcm9pX21hbmFnZXJfY2hhbmdlcyIsICJVTktOT1dOX0ZBSUxfQ0xPU0VEIik7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGFzdF9ldmVudF9kaXNrX3dyaXRl";
    encoded = encoded + "cyIsICJOT05FIik7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgdGVsZW1ldHJ5UmVjb3JkKHsKICAgICAgICAgICAgICAgIGV2ZW50X3R5cGU6ICJDT01NQU5EX0JMT0NLRUQiLCBpbXA6IGltcCwKICAgICAgICAgICAgICAgIG93bmVyX2NvbnRleHQ6IG93bmVyLmV4cGVjdGVkX3NuYXBzaG90IHx8IG51bGwsCiAg";
    encoded = encoded + "ICAgICAgICAgICAgICBvcGVyYXRpb246ICJFRElUX1JPSSIsIHBoYXNlOiAiQ0FOQ0VMIiwKICAgICAgICAgICAgICAgIHN0YXR1czogIkJMT0NLRURfTk9UX1ZFUklGSUVEIiwKICAgICAgICAgICAgICAgIHB1YmxpY2F0aW9uX2F0dGVtcHRlZDogZmFsc2UsIHB1YmxpY2F0aW9uX3RhcmdldF9jbGFzczogIk5PTkUi";
    encoded = encoded + "LAogICAgICAgICAgICAgICAgcHVibGljYXRpb25fcmVzdWx0OiAiTk9UX0FUVEVNUFRFRCIsIHdyaXRlX2F0dGVtcHRlZDogZmFsc2UsCiAgICAgICAgICAgICAgICB3cml0ZV90YXJnZXRfY2xhc3M6ICJQUk9KRUNUX1NDSUVOQ0UiLCB3cml0ZV9yZXN1bHQ6ICJCTE9DS0VEIiwKICAgICAgICAgICAgICAgIGRldGFp";
    encoded = encoded + "bF9jb2RlOiBkZXRhaWwKICAgICAgICAgICAgfSk7CiAgICAgICAgfSBjYXRjaCAoaWdub3JlZFF1YXJhbnRpbmVUZWxlbWV0cnkpIHsKICAgICAgICAgICAgLy8gVGhlIGltYWdlIHByb3BlcnR5IGlzIHRoZSBhdXRob3JpdGF0aXZlIGZhaWwtY2xvc2VkIGdhdGUgZXZlbgogICAgICAgICAgICAvLyB3aGVuIHRoZSB0";
    encoded = encoded + "ZWxlbWV0cnkgcmluZyBpdHNlbGYgaXMgdGhlIHRyaWdnZXJpbmcgZmFpbHVyZS4KICAgICAgICB9CiAgICAgICAgSUoubG9nKCJDVEwgUDEgUk9MTEJBQ0tfUVVBUkFOVElORUQ6ICIgKyBTdHJpbmcocmVhc29uKSk7CiAgICAgICAgSUoubG9nKCJDVEwgUDEgUk9MTEJBQ0tfSU5URVJOQUxfU1VCQ09ERTogIiArIGV4";
    encoded = encoded + "YWN0U3ViY29kZSk7CiAgICB9CgogICAgZnVuY3Rpb24gcm9sbGJhY2tSb2kob3duZXIpIHsKICAgICAgICB2YXIgaW1wID0gb3duZXIgPT0gbnVsbCA/IG51bGwgOiBvd25lci5pbXA7CiAgICAgICAgdmFyIG1hbmFnZXIgPSBSb2lNYW5hZ2VyLmdldEluc3RhbmNlMigpOwogICAgICAgIHZhciBhY3RpdmVJbXA7CiAg";
    encoded = encoded + "ICAgICAgdmFyIGFjdGl2ZVdpbmRvdzsKICAgICAgICB2YXIgYWN0aXZlUm9pOwogICAgICAgIHZhciBhY3RpdmVVdWlkOwogICAgICAgIHZhciBhY3RpdmVJbmRleDsKICAgICAgICB2YXIgYWN0aXZlU3RhdGU7CiAgICAgICAgdmFyIGFjdGl2ZU1hbmFnZXJTdGF0ZTsKICAgICAgICB2YXIgZXhwZWN0ZWRMaXZlOwog";
    encoded = encoded + "ICAgICAgIHZhciBtYW5hZ2VyUm9pOwogICAgICAgIHZhciBpbWFnZVJvaTsKICAgICAgICB2YXIgYWN0aXZlTWFuYWdlclJvaTsKICAgICAgICB2YXIgcG9zdGNvbmRpdGlvbjsKICAgICAgICB0cnkgewogICAgICAgICAgICBpZiAob3duZXIgPT0gbnVsbCB8fCBvd25lci5jbG9uZSA9PSBudWxsIHx8IGltcCA9PSBu";
    encoded = encoded + "dWxsIHx8IG1hbmFnZXIgPT0gbnVsbCB8fAogICAgICAgICAgICAgICAgICAgIG93bmVyLnV1aWQgPT0gbnVsbCB8fCBvd25lci51dWlkID09PSAiTk9UX0FQUExJQ0FCTEUiIHx8CiAgICAgICAgICAgICAgICAgICAgcm9pVXVpZChvd25lci5jbG9uZSkgIT09IG93bmVyLnV1aWQgfHwKICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICBtYW5hZ2VyLmdldENvdW50KCkgIT09IG93bmVyLmNvdW50IHx8CiAgICAgICAgICAgICAgICAgICAgdW5pcXVlUm9pSW5kZXgobWFuYWdlciwgb3duZXIudXVpZCkgIT09IG93bmVyLmluZGV4KSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlJPTExCQUNLX09XTkVSX1BSRUNPTkRJVElPTl9GQUlM";
    encoded = encoded + "RUQiKTsKICAgICAgICAgICAgfQogICAgICAgICAgICBpZiAoIXJvbGxiYWNrT3duZXJDb250ZXh0TWF0Y2hlcyhvd25lcikpIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUk9MTEJBQ0tfQ09OVEVYVF9NSVNNQVRDSCIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGV4cGVjdGVkTGl2ZSA9IGNh";
    encoded = encoded + "cHR1cmUoaW1wLCBvd25lci5leHBlY3RlZF9jb21tYW5kX2lkLCB0cnVlKTsKICAgICAgICAgICAgaWYgKGV4cGVjdGVkTGl2ZS5zZWxlY3Rpb25fcmV2aXNpb24gIT09IG93bmVyLmV4cGVjdGVkX3NlbGVjdGlvbl9yZXZpc2lvbiB8fAogICAgICAgICAgICAgICAgICAgIGV4cGVjdGVkTGl2ZS5nZW5lcmF0aW9uX3Rv";
    encoded = encoded + "a2VuICE9PSBvd25lci5leHBlY3RlZF9nZW5lcmF0aW9uX3Rva2VuIHx8CiAgICAgICAgICAgICAgICAgICAgZXhwZWN0ZWRMaXZlLmNvbnRleHRfZmluZ2VycHJpbnRfc2hhMjU2ICE9PSBvd25lci5leHBlY3RlZF9jb250ZXh0X3NoYTI1NikgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJST0xMQkFD";
    encoded = encoded + "S19DT05URVhUX01JU01BVENIIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgYWN0aXZlSW1wID0gV00uZ2V0Q3VycmVudEltYWdlKCk7CiAgICAgICAgICAgIGFjdGl2ZVdpbmRvdyA9IGFjdGl2ZUltcCA9PSBudWxsID8gbnVsbCA6IGFjdGl2ZUltcC5nZXRXaW5kb3coKTsKICAgICAgICAgICAgYWN0aXZlUm9p";
    encoded = encoded + "ID0gYWN0aXZlSW1wID09IG51bGwgPyBudWxsIDogYWN0aXZlSW1wLmdldFJvaSgpOwogICAgICAgICAgICBhY3RpdmVVdWlkID0gcm9pVXVpZChhY3RpdmVSb2kpOwogICAgICAgICAgICBhY3RpdmVJbmRleCA9IHVuaXF1ZVJvaUluZGV4KG1hbmFnZXIsIGFjdGl2ZVV1aWQpOwogICAgICAgICAgICBpZiAoYWN0aXZl";
    encoded = encoded + "SW1wID09IG51bGwgfHwgYWN0aXZlV2luZG93ID09IG51bGwgfHwgYWN0aXZlUm9pID09IG51bGwgfHwKICAgICAgICAgICAgICAgICAgICBhY3RpdmVJbmRleCA8IDAgfHwKICAgICAgICAgICAgICAgICAgICAoYWN0aXZlSW1wID09PSBpbXAgJiYgbWFuYWdlci5nZXRTZWxlY3RlZEluZGV4KCkgIT09IGFjdGl2ZUlu";
    encoded = encoded + "ZGV4KSkgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJST0xMQkFDS19BQ1RJVkVfVEFSR0VUX0lOVkFMSUQiKTsKICAgICAgICAgICAgfQogICAgICAgICAgICBhY3RpdmVTdGF0ZSA9IHJvaVN0YXRlU2hhMjU2KGFjdGl2ZVJvaSk7CiAgICAgICAgICAgIGFjdGl2ZU1hbmFnZXJSb2kgPSBtYW5hZ2Vy";
    encoded = encoded + "LmdldFJvaShhY3RpdmVJbmRleCk7CiAgICAgICAgICAgIGFjdGl2ZU1hbmFnZXJTdGF0ZSA9IHJvaVN0YXRlU2hhMjU2KGFjdGl2ZU1hbmFnZXJSb2kpOwogICAgICAgICAgICBpZiAocm9pVXVpZChhY3RpdmVNYW5hZ2VyUm9pKSAhPT0gYWN0aXZlVXVpZCB8fAogICAgICAgICAgICAgICAgICAgIGFjdGl2ZU1hbmFn";
    encoded = encoded + "ZXJTdGF0ZSAhPT0gYWN0aXZlU3RhdGUgfHwKICAgICAgICAgICAgICAgICAgICAoYWN0aXZlSW1wICE9PSBpbXAgJiYgYWN0aXZlSW5kZXggPT09IG93bmVyLmluZGV4KSB8fAogICAgICAgICAgICAgICAgICAgIChhY3RpdmVJbXAgPT09IGltcCAmJiBhY3RpdmVJbmRleCAhPT0gb3duZXIuaW5kZXgpKSB7CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlJPTExCQUNLX0FDVElWRV9TVEFURV9ESVZFUkdFTlQiKTsKICAgICAgICAgICAgfQoKICAgICAgICAgICAgbWFuYWdlci5zZXRSb2kob3duZXIuY2xvbmUsIG93bmVyLmluZGV4KTsKICAgICAgICAgICAgaW1wLnNldFJvaShvd25lci5jbG9uZSk7CiAgICAgICAgICAg";
    encoded = encoded + "IGltcC51cGRhdGVBbmREcmF3KCk7CiAgICAgICAgICAgIGlmIChhY3RpdmVJbXAgIT09IGltcCkgewogICAgICAgICAgICAgICAgbWFuYWdlci5zZWxlY3QoYWN0aXZlSW1wLCBhY3RpdmVJbmRleCk7CiAgICAgICAgICAgICAgICBhY3RpdmVJbXAuc2V0Um9pKGFjdGl2ZVJvaSk7CiAgICAgICAgICAgICAgICBhY3Rp";
    encoded = encoded + "dmVJbXAudXBkYXRlQW5kRHJhdygpOwogICAgICAgICAgICAgICAgV00uc2V0Q3VycmVudFdpbmRvdyhhY3RpdmVXaW5kb3cpOwogICAgICAgICAgICB9IGVsc2UgewogICAgICAgICAgICAgICAgbWFuYWdlci5zZWxlY3QoaW1wLCBvd25lci5pbmRleCk7CiAgICAgICAgICAgICAgICBpbXAuc2V0Um9pKG93bmVyLmNs";
    encoded = encoded + "b25lKTsKICAgICAgICAgICAgICAgIGltcC51cGRhdGVBbmREcmF3KCk7CiAgICAgICAgICAgICAgICBXTS5zZXRDdXJyZW50V2luZG93KGFjdGl2ZVdpbmRvdyk7CiAgICAgICAgICAgIH0KCiAgICAgICAgICAgIG1hbmFnZXJSb2kgPSBtYW5hZ2VyLmdldFJvaShvd25lci5pbmRleCk7CiAgICAgICAgICAgIGltYWdl";
    encoded = encoded + "Um9pID0gaW1wLmdldFJvaSgpOwogICAgICAgICAgICBhY3RpdmVNYW5hZ2VyUm9pID0gbWFuYWdlci5nZXRSb2koYWN0aXZlSW5kZXgpOwogICAgICAgICAgICBleHBlY3RlZExpdmUgPSBjYXB0dXJlKGltcCwgb3duZXIuZXhwZWN0ZWRfY29tbWFuZF9pZCwgdHJ1ZSk7CiAgICAgICAgICAgIC8vIHNlbGVjdGlvbl9y";
    encoded = encoded + "ZXZpc2lvbiBpcyBhIG1vbm90b25pYyBtdXRhdGlvbi1hdHRlbXB0IGdlbmVyYXRpb24uCiAgICAgICAgICAgIC8vIEdlb21ldHJ5IHJvbGxiYWNrIHJlc3RvcmVzIGJ5dGVzIGJ1dCBuZXZlciBkZWNyZW1lbnRzIGl0LgogICAgICAgICAgICBwb3N0Y29uZGl0aW9uID0gbWFuYWdlci5nZXRDb3VudCgpID09PSBvd25l";
    encoded = encoded + "ci5jb3VudCAmJgogICAgICAgICAgICAgICAgdW5pcXVlUm9pSW5kZXgobWFuYWdlciwgb3duZXIudXVpZCkgPT09IG93bmVyLmluZGV4ICYmCiAgICAgICAgICAgICAgICByb2lVdWlkKG1hbmFnZXJSb2kpID09PSBvd25lci51dWlkICYmCiAgICAgICAgICAgICAgICByb2lTdGF0ZVNoYTI1NihtYW5hZ2VyUm9pKSA9";
    encoded = encoded + "PT0gb3duZXIuYmFzZWxpbmVfc3RhdGVfc2hhMjU2ICYmCiAgICAgICAgICAgICAgICByb2lVdWlkKGltYWdlUm9pKSA9PT0gb3duZXIudXVpZCAmJgogICAgICAgICAgICAgICAgcm9pU3RhdGVTaGEyNTYoaW1hZ2VSb2kpID09PSBvd25lci5iYXNlbGluZV9zdGF0ZV9zaGEyNTYgJiYKICAgICAgICAgICAgICAgIG1h";
    encoded = encoded + "bmFnZXIuZ2V0U2VsZWN0ZWRJbmRleCgpID09PSBhY3RpdmVJbmRleCAmJgogICAgICAgICAgICAgICAgV00uZ2V0Q3VycmVudEltYWdlKCkgPT09IGFjdGl2ZUltcCAmJgogICAgICAgICAgICAgICAgV00uZ2V0Q3VycmVudEltYWdlKCkuZ2V0V2luZG93KCkgPT09IGFjdGl2ZVdpbmRvdyAmJgogICAgICAgICAgICAg";
    encoded = encoded + "ICAgcm9pVXVpZChhY3RpdmVJbXAuZ2V0Um9pKCkpID09PSBhY3RpdmVVdWlkICYmCiAgICAgICAgICAgICAgICByb2lTdGF0ZVNoYTI1NihhY3RpdmVJbXAuZ2V0Um9pKCkpID09PQogICAgICAgICAgICAgICAgICAgIChhY3RpdmVJbXAgPT09IGltcCA/IG93bmVyLmJhc2VsaW5lX3N0YXRlX3NoYTI1NiA6IGFjdGl2";
    encoded = encoded + "ZVN0YXRlKSAmJgogICAgICAgICAgICAgICAgcm9pVXVpZChhY3RpdmVNYW5hZ2VyUm9pKSA9PT0gYWN0aXZlVXVpZCAmJgogICAgICAgICAgICAgICAgcm9pU3RhdGVTaGEyNTYoYWN0aXZlTWFuYWdlclJvaSkgPT09CiAgICAgICAgICAgICAgICAgICAgKGFjdGl2ZUltcCA9PT0gaW1wID8gb3duZXIuYmFzZWxpbmVf";
    encoded = encoded + "c3RhdGVfc2hhMjU2IDogYWN0aXZlTWFuYWdlclN0YXRlKSAmJgogICAgICAgICAgICAgICAgZXhwZWN0ZWRMaXZlLnNlbGVjdGlvbl9yZXZpc2lvbiA9PT0gb3duZXIuZXhwZWN0ZWRfc2VsZWN0aW9uX3JldmlzaW9uICYmCiAgICAgICAgICAgICAgICBleHBlY3RlZExpdmUuZ2VuZXJhdGlvbl90b2tlbiA9PT0gb3du";
    encoded = encoded + "ZXIuZXhwZWN0ZWRfZ2VuZXJhdGlvbl90b2tlbiAmJgogICAgICAgICAgICAgICAgZXhwZWN0ZWRMaXZlLmNvbnRleHRfZmluZ2VycHJpbnRfc2hhMjU2ID09PSBvd25lci5leHBlY3RlZF9jb250ZXh0X3NoYTI1NjsKICAgICAgICAgICAgaWYgKCFwb3N0Y29uZGl0aW9uKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBu";
    encoded = encoded + "ZXcgRXJyb3IoIlJPTExCQUNLX1BPU1RDT05ESVRJT05fRkFJTEVEIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgb3duZXIucm9sbGJhY2tfaW50ZXJuYWxfc3ViY29kZSA9IG51bGw7CiAgICAgICAgICAgIHJldHVybiB0cnVlOwogICAgICAgIH0gY2F0Y2ggKHJvbGxiYWNrRmFpbHVyZSkgewogICAgICAgICAg";
    encoded = encoded + "ICBpZiAob3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgb3duZXIucm9sbGJhY2tfaW50ZXJuYWxfc3ViY29kZSA9IGRpYWdub3N0aWNTdWJjb2RlKAogICAgICAgICAgICAgICAgICAgIHJvbGxiYWNrRmFpbHVyZSwgIlJPTExCQUNLX0VYQ0VQVElPTiIKICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAg";
    encoded = encoded + "IH0KICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0KICAgIH0KCiAgICBmdW5jdGlvbiByb2xsYmFja093bmVyTmVlZHNTZXR0bGVtZW50KG93bmVyKSB7CiAgICAgICAgcmV0dXJuIG93bmVyICE9IG51bGwgJiYgb3duZXIuc3RhdHVzID09PSAiUEVORElORyI7CiAgICB9CgogICAgZnVuY3Rpb24gc2V0";
    encoded = encoded + "dGxlUm9sbGJhY2tPd25lcihvd25lciwgcmVhc29uKSB7CiAgICAgICAgdmFyIHJlc3VsdCA9IGZhbHNlOwogICAgICAgIGlmIChvd25lciA9PSBudWxsKSB7CiAgICAgICAgICAgIHJldHVybiB0cnVlOwogICAgICAgIH0KICAgICAgICBydW50aW1lU3RhdGVMb2NrLmxvY2soKTsKICAgICAgICB0cnkgewogICAgICAg";
    encoded = encoded + "ICAgICBpZiAob3duZXIuc3RhdHVzID09PSAiUk9MTEVEX0JBQ0siIHx8IG93bmVyLnN0YXR1cyA9PT0gIkNPTU1JVFRFRCIgfHwKICAgICAgICAgICAgICAgICAgICBvd25lci5zdGF0dXMgPT09ICJDT01NSVRUSU5HIikgewogICAgICAgICAgICAgICAgcmV0dXJuIHRydWU7CiAgICAgICAgICAgIH0KICAgICAgICAg";
    encoded = encoded + "ICAgaWYgKG93bmVyLnN0YXR1cyA9PT0gIkZBSUxFRCIgfHwgb3duZXIuc3RhdHVzID09PSAiUk9MTElOR19CQUNLIikgewogICAgICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgICAgICB9CiAgICAgICAgICAgIG93bmVyLnN0YXR1cyA9ICJST0xMSU5HX0JBQ0siOwogICAgICAgIH0gZmluYWxseSB7CiAg";
    encoded = encoded + "ICAgICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgICAgIHRyeSB7CiAgICAgICAgICAgIHJlc3VsdCA9IG9uRWR0QW5kV2FpdChmdW5jdGlvbiAoKSB7CiAgICAgICAgICAgICAgICB2YXIgdmVyaWZpZWQgPSByb2xsYmFja1JvaShvd25lcik7CiAgICAgICAgICAgICAgICBpZiAo";
    encoded = encoded + "IXZlcmlmaWVkKSB7CiAgICAgICAgICAgICAgICAgICAgcXVhcmFudGluZVJvbGxiYWNrKAogICAgICAgICAgICAgICAgICAgICAgICBvd25lciwgcmVhc29uLAogICAgICAgICAgICAgICAgICAgICAgICBvd25lci5yb2xsYmFja19pbnRlcm5hbF9zdWJjb2RlIHx8ICJST0xMQkFDS19GQUlMVVJFX1VOQ0xBU1NJRklF";
    encoded = encoded + "RCIKICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgcmV0dXJuIHZlcmlmaWVkOwogICAgICAgICAgICB9KSA9PT0gdHJ1ZTsKICAgICAgICB9IGNhdGNoIChyb2xsYmFja0ZhaWx1cmUpIHsKICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgIG93bmVyLnJv";
    encoded = encoded + "bGxiYWNrX2ludGVybmFsX3N1YmNvZGUgPSBkaWFnbm9zdGljU3ViY29kZSgKICAgICAgICAgICAgICAgICAgICByb2xsYmFja0ZhaWx1cmUsICJST0xMQkFDS19FWENFUFRJT04iCiAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgb25FZHRBbmRXYWl0KGZ1bmN0aW9uICgpIHsKICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICBxdWFyYW50aW5lUm9sbGJhY2soCiAgICAgICAgICAgICAgICAgICAgICAgIG93bmVyLCByZWFzb24sCiAgICAgICAgICAgICAgICAgICAgICAgIG93bmVyLnJvbGxiYWNrX2ludGVybmFsX3N1YmNvZGUgfHwgIlJPTExCQUNLX0VYQ0VQVElPTiIKICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAg";
    encoded = encoded + "ICAgfSk7CiAgICAgICAgICAgIH0gY2F0Y2ggKGlnbm9yZWRRdWFyYW50aW5lRmFpbHVyZSkge30KICAgICAgICAgICAgcmVzdWx0ID0gZmFsc2U7CiAgICAgICAgfQogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIG93bmVyLnN0YXR1cyA9IHJlc3VsdCA/ICJS";
    encoded = encoded + "T0xMRURfQkFDSyIgOiAiRkFJTEVEIjsKICAgICAgICAgICAgb3duZXIuZmFpbHVyZV9yZWFzb24gPSByZXN1bHQgPyBudWxsIDogU3RyaW5nKHJlYXNvbik7CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICAgICAgcmV0dXJuIHJlc3Vs";
    encoded = encoded + "dDsKICAgIH0KCiAgICBmdW5jdGlvbiBiZWdpblJvbGxiYWNrQ29tbWl0KG93bmVyKSB7CiAgICAgICAgaWYgKG93bmVyID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuIHRydWU7CiAgICAgICAgfQogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGlmIChv";
    encoded = encoded + "d25lci5zdGF0dXMgIT09ICJQRU5ESU5HIikgewogICAgICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgICAgICB9CiAgICAgICAgICAgIG93bmVyLnN0YXR1cyA9ICJDT01NSVRUSU5HIjsKICAgICAgICAgICAgcmV0dXJuIHRydWU7CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0";
    encoded = encoded + "YXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gY2FuY2VsUm9sbGJhY2tDb21taXQob3duZXIpIHsKICAgICAgICBpZiAob3duZXIgPT0gbnVsbCkgewogICAgICAgICAgICByZXR1cm47CiAgICAgICAgfQogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRy";
    encoded = encoded + "eSB7CiAgICAgICAgICAgIGlmIChvd25lci5zdGF0dXMgPT09ICJDT01NSVRUSU5HIikgewogICAgICAgICAgICAgICAgb3duZXIuc3RhdHVzID0gIlBFTkRJTkciOwogICAgICAgICAgICB9CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAg";
    encoded = encoded + "ICB9CgogICAgZnVuY3Rpb24gZmluaXNoUm9sbGJhY2tDb21taXQob3duZXIpIHsKICAgICAgICBpZiAob3duZXIgPT0gbnVsbCkgewogICAgICAgICAgICByZXR1cm47CiAgICAgICAgfQogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGlmIChvd25lci5zdGF0";
    encoded = encoded + "dXMgIT09ICJDT01NSVRUSU5HIikgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJST0xMQkFDS19DT01NSVRfU1RBVEVfSU5WQUxJRCIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIG93bmVyLnN0YXR1cyA9ICJDT01NSVRURUQiOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJ1bnRp";
    encoded = encoded + "bWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIGNsZWFyUGVuZGluZ1JvbGxiYWNrKHN0YXRlLCBvd25lcikgewogICAgICAgIGlmIChzdGF0ZSA9PSBudWxsIHx8IG93bmVyID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuOwogICAgICAgIH0KICAgICAgICBydW50aW1l";
    encoded = encoded + "U3RhdGVMb2NrLmxvY2soKTsKICAgICAgICB0cnkgewogICAgICAgICAgICBpZiAoc3RhdGUucGVuZGluZ1JvbGxiYWNrT3duZXIgPT09IG93bmVyKSB7CiAgICAgICAgICAgICAgICBzdGF0ZS5wZW5kaW5nUm9sbGJhY2tPd25lciA9IG51bGw7CiAgICAgICAgICAgICAgICBzdGF0ZS5wZW5kaW5nU25hcHNob3QgPSBu";
    encoded = encoded + "dWxsOwogICAgICAgICAgICAgICAgc3RhdGUucGVuZGluZ1JlcXVlc3RJZCA9IG51bGw7CiAgICAgICAgICAgICAgICBzdGF0ZS5wZW5kaW5nVHJhbnNhY3Rpb25JZCA9IG51bGw7CiAgICAgICAgICAgICAgICBzdGF0ZS5wZW5kaW5nRGV0YWlsQ29kZSA9IG51bGw7CiAgICAgICAgICAgIH0KICAgICAgICB9IGZpbmFs";
    encoded = encoded + "bHkgewogICAgICAgICAgICBydW50aW1lU3RhdGVMb2NrLnVubG9jaygpOwogICAgICAgIH0KICAgIH0KCiAgICBmdW5jdGlvbiB0cmFuc2ZlclJvbGxiYWNrT3duZXIoc3RhdGUsIG93bmVyKSB7CiAgICAgICAgdmFyIGk7CiAgICAgICAgcnVudGltZVN0YXRlTG9jay5sb2NrKCk7CiAgICAgICAgdHJ5IHsKICAgICAg";
    encoded = encoded + "ICAgICAgaWYgKHN0YXRlID09IG51bGwgfHwgc3RhdGUuY2xvc2VkID09PSB0cnVlIHx8IG93bmVyID09IG51bGwgfHwKICAgICAgICAgICAgICAgICAgICAob3duZXIuc3RhdHVzICE9PSAiUEVORElORyIgJiYgb3duZXIuc3RhdHVzICE9PSAiQ09NTUlUVElORyIpKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcg";
    encoded = encoded + "RXJyb3IoIlJPTExCQUNLX1RSQU5TRkVSX1NUQVRFX0NMT1NFRF9PUl9JTlZBTElEIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgb3duZXIudHJhbnNmZXJyZWQgPSB0cnVlOwogICAgICAgICAgICBpZiAob3duZXIuc3RhdHVzID09PSAiUEVORElORyIgfHwgb3duZXIuc3RhdHVzID09PSAiQ09NTUlUVElORyIp";
    encoded = encoded + "IHsKICAgICAgICAgICAgICAgIGZvciAoaSA9IDA7IGkgPCBzdGF0ZS5pbkZsaWdodFJvbGxiYWNrT3duZXJzLmxlbmd0aDsgaSArPSAxKSB7CiAgICAgICAgICAgICAgICAgICAgaWYgKHN0YXRlLmluRmxpZ2h0Um9sbGJhY2tPd25lcnNbaV0gPT09IG93bmVyKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIGJyZWFr";
    encoded = encoded + "OwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGlmIChpID09PSBzdGF0ZS5pbkZsaWdodFJvbGxiYWNrT3duZXJzLmxlbmd0aCkgewogICAgICAgICAgICAgICAgICAgIHN0YXRlLmluRmxpZ2h0Um9sbGJhY2tPd25lcnMucHVzaChvd25lcik7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICB9CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKHN0YXRlLnBlbmRpbmdSb2xsYmFja093bmVyID09PSBvd25lcikgewogICAgICAgICAgICAgICAgc3RhdGUucGVuZGluZ1JvbGxiYWNrT3duZXIgPSBudWxsOwogICAgICAgICAgICAgICAgc3RhdGUucGVuZGluZ1NuYXBzaG90ID0gbnVsbDsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgIHN0YXRlLnBlbmRpbmdSZXF1ZXN0SWQgPSBudWxsOwogICAgICAgICAgICAgICAgc3RhdGUucGVuZGluZ1RyYW5zYWN0aW9uSWQgPSBudWxsOwogICAgICAgICAgICAgICAgc3RhdGUucGVuZGluZ0RldGFpbENvZGUgPSBudWxsOwogICAgICAgICAgICB9CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAg";
    encoded = encoded + "ICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gcmVsZWFzZVJvbGxiYWNrT3duZXIoc3RhdGUsIG93bmVyKSB7CiAgICAgICAgdmFyIGk7CiAgICAgICAgaWYgKHN0YXRlID09IG51bGwgfHwgb3duZXIgPT0gbnVsbCkgewogICAgICAgICAgICByZXR1cm47";
    encoded = encoded + "CiAgICAgICAgfQogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGZvciAoaSA9IHN0YXRlLmluRmxpZ2h0Um9sbGJhY2tPd25lcnMubGVuZ3RoIC0gMTsgaSA+PSAwOyBpIC09IDEpIHsKICAgICAgICAgICAgICAgIGlmIChzdGF0ZS5pbkZsaWdodFJvbGxiYWNr";
    encoded = encoded + "T3duZXJzW2ldID09PSBvd25lcikgewogICAgICAgICAgICAgICAgICAgIHN0YXRlLmluRmxpZ2h0Um9sbGJhY2tPd25lcnMuc3BsaWNlKGksIDEpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2soKTsKICAg";
    encoded = encoded + "ICAgICB9CiAgICAgICAgY2xlYXJQZW5kaW5nUm9sbGJhY2soc3RhdGUsIG93bmVyKTsKICAgIH0KCiAgICBmdW5jdGlvbiB1bmlxdWVSb2lJbmRleChtYW5hZ2VyLCB1dWlkKSB7CiAgICAgICAgdmFyIGZvdW5kID0gLTE7CiAgICAgICAgdmFyIGk7CiAgICAgICAgaWYgKG1hbmFnZXIgPT0gbnVsbCB8fCB1dWlkID09";
    encoded = encoded + "IG51bGwgfHwgU3RyaW5nKHV1aWQpID09PSAiIiB8fAogICAgICAgICAgICAgICAgU3RyaW5nKHV1aWQpID09PSAiTk9UX0FQUExJQ0FCTEUiKSB7CiAgICAgICAgICAgIHJldHVybiAtMTsKICAgICAgICB9CiAgICAgICAgZm9yIChpID0gMDsgaSA8IG1hbmFnZXIuZ2V0Q291bnQoKTsgaSArPSAxKSB7CiAgICAgICAg";
    encoded = encoded + "ICAgIGlmIChyb2lVdWlkKG1hbmFnZXIuZ2V0Um9pKGkpKSA9PT0gU3RyaW5nKHV1aWQpKSB7CiAgICAgICAgICAgICAgICBpZiAoZm91bmQgPj0gMCkgewogICAgICAgICAgICAgICAgICAgIHJldHVybiAtMjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGZvdW5kID0gaTsKICAgICAgICAgICAgfQog";
    encoded = encoded + "ICAgICAgIH0KICAgICAgICByZXR1cm4gZm91bmQ7CiAgICB9CgogICAgZnVuY3Rpb24gcm9sbGJhY2tFeGVjdXRpb25BbGxvd2VkKHN0YXRlLCBvd25lcikgewogICAgICAgIHZhciBpOwogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGlmIChzdGF0ZSA9PSBu";
    encoded = encoded + "dWxsIHx8IHN0YXRlLmNsb3NlZCA9PT0gdHJ1ZSB8fCBvd25lciA9PSBudWxsIHx8CiAgICAgICAgICAgICAgICAgICAgb3duZXIuc3RhdHVzICE9PSAiUEVORElORyIgfHwgb3duZXIudHJhbnNmZXJyZWQgIT09IHRydWUpIHsKICAgICAgICAgICAgICAgIHJldHVybiBmYWxzZTsKICAgICAgICAgICAgfQogICAgICAg";
    encoded = encoded + "ICAgICBmb3IgKGkgPSAwOyBpIDwgc3RhdGUuaW5GbGlnaHRSb2xsYmFja093bmVycy5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICAgICAgaWYgKHN0YXRlLmluRmxpZ2h0Um9sbGJhY2tPd25lcnNbaV0gPT09IG93bmVyKSB7CiAgICAgICAgICAgICAgICAgICAgcmV0dXJuIHRydWU7CiAgICAgICAgICAgICAg";
    encoded = encoded + "ICB9CiAgICAgICAgICAgIH0KICAgICAgICAgICAgcmV0dXJuIGZhbHNlOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIGV4ZWN1dGVCb3VuZEludGVyYWN0aXZlRWRpdChzdGF0ZSwgcm9sbGJhY2tPd25l";
    encoded = encoded + "ciwgc25hcHNob3QsIG1hY3JvTmFtZSkgewogICAgICAgIHZhciBpbXAgPSBzbmFwc2hvdCA9PSBudWxsID8gbnVsbCA6IHNuYXBzaG90LmltcDsKICAgICAgICB2YXIgbWFuYWdlciA9IG51bGw7CiAgICAgICAgdmFyIHRhcmdldEluZGV4OwogICAgICAgIHZhciByZXN0b3JlSW5kZXg7CiAgICAgICAgdmFyIHJlc3Rv";
    encoded = encoded + "cmVVdWlkOwogICAgICAgIHZhciB0YXJnZXQ7CiAgICAgICAgdmFyIHJlc3RvcmVUYXJnZXQ7CiAgICAgICAgdmFyIGV4ZWN1dGVkID0gZmFsc2U7CiAgICAgICAgLy8gQSBxdWV1ZWQgSW52b2NhdGlvbkV2ZW50IGNhbiBvdXRsaXZlIGludm9rZUFuZFdhaXQncyBpbnRlcnJ1cHRlZAogICAgICAgIC8vIGNhbGxlci4g";
    encoded = encoded + "IFJldmFsaWRhdGUgZHVyYWJsZSBvd25lciBjdXN0b2R5IGJlZm9yZSB0b3VjaGluZyBzZWxlY3Rpb24sCiAgICAgICAgLy8gaW1tZWRpYXRlbHkgYmVmb3JlIEV4ZWN1dGVyLCBhbmQgb25jZSBtb3JlIGFmdGVyIHRoZSBjb21tYW5kLgogICAgICAgIGlmICghcm9sbGJhY2tFeGVjdXRpb25BbGxvd2VkKHN0YXRlLCBy";
    encoded = encoded + "b2xsYmFja093bmVyKSB8fCBpbXAgPT0gbnVsbCkgewogICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAgICAgIG1hbmFnZXIgPSBSb2lNYW5hZ2VyLmdldEluc3RhbmNlMigpOwogICAgICAgIGlmIChtYW5hZ2VyID09IG51bGwgfHwgV00uZ2V0Q3VycmVudEltYWdlKCkgIT09IGltcCkgewogICAg";
    encoded = encoded + "ICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAgICAgIC8vIFRoaXMgZnVuY3Rpb24gcnVucyBzeW5jaHJvbm91c2x5IG9uIHRoZSBFRFQuICBDYXB0dXJlIHRoZSBsaXZlCiAgICAgICAgLy8gc2VsZWN0aW9uIGhlcmUsIGFmdGVyIGFueSBVSSBldmVudHMgcXVldWVkIGJldHdlZW4gdGhlIGRlYm91bmNl";
    encoded = encoded + "CiAgICAgICAgLy8gY2FsbGJhY2sgYW5kIHdyaXRlciBkaXNwYXRjaCwgcmF0aGVyIHRoYW4gYXQgdGltZXItZmlyZSB0aW1lLgogICAgICAgIHJlc3RvcmVVdWlkID0gcm9pVXVpZChzZWxlY3RlZFJvaShpbXApKTsKICAgICAgICB0YXJnZXRJbmRleCA9IHVuaXF1ZVJvaUluZGV4KG1hbmFnZXIsIHNuYXBzaG90Lm9i";
    encoded = encoded + "amVjdF91dWlkKTsKICAgICAgICByZXN0b3JlSW5kZXggPSB1bmlxdWVSb2lJbmRleChtYW5hZ2VyLCByZXN0b3JlVXVpZCk7CiAgICAgICAgaWYgKHRhcmdldEluZGV4IDwgMCB8fCByZXN0b3JlSW5kZXggPCAwKSB7CiAgICAgICAgICAgIHJldHVybiBmYWxzZTsKICAgICAgICB9CiAgICAgICAgdGFyZ2V0ID0gbWFu";
    encoded = encoded + "YWdlci5nZXRSb2kodGFyZ2V0SW5kZXgpOwogICAgICAgIG1hbmFnZXIuc2VsZWN0KGltcCwgdGFyZ2V0SW5kZXgpOwogICAgICAgIGltcC5zZXRSb2kodGFyZ2V0KTsKICAgICAgICBpbXAudXBkYXRlQW5kRHJhdygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGlmICghc2FtZUltYWdlQ29udGV4dChzbmFwc2hv";
    encoded = encoded + "dCwgZmFsc2UpKSB7CiAgICAgICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKCFyb2xsYmFja0V4ZWN1dGlvbkFsbG93ZWQoc3RhdGUsIHJvbGxiYWNrT3duZXIpKSB7CiAgICAgICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgICAgIH0KICAgICAgICAgICAg";
    encoded = encoded + "bmV3IEV4ZWN1dGVyKG1hY3JvTmFtZSkucnVuKCk7CiAgICAgICAgICAgIGlmICghcm9sbGJhY2tFeGVjdXRpb25BbGxvd2VkKHN0YXRlLCByb2xsYmFja093bmVyKSkgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJCT1VORF9FRElUX09XTkVSX0lOVkFMSURfUE9TVF9DT01NQU5EIik7CiAgICAgICAg";
    encoded = encoded + "ICAgIH0KICAgICAgICAgICAgZXhlY3V0ZWQgPSB0cnVlOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJlc3RvcmVJbmRleCA9IHVuaXF1ZVJvaUluZGV4KG1hbmFnZXIsIHJlc3RvcmVVdWlkKTsKICAgICAgICAgICAgaWYgKHJlc3RvcmVJbmRleCA8IDApIHsKICAgICAgICAgICAgICAgIHRocm93IG5l";
    encoded = encoded + "dyBFcnJvcigiQk9VTkRfRURJVF9SRVNUT1JFX1NFTEVDVElPTl9NSVNTSU5HX09SX0RVUExJQ0FURSIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIHJlc3RvcmVUYXJnZXQgPSBtYW5hZ2VyLmdldFJvaShyZXN0b3JlSW5kZXgpOwogICAgICAgICAgICBtYW5hZ2VyLnNlbGVjdChpbXAsIHJlc3RvcmVJbmRleCk7";
    encoded = encoded + "CiAgICAgICAgICAgIGltcC5zZXRSb2kocmVzdG9yZVRhcmdldCk7CiAgICAgICAgICAgIGltcC51cGRhdGVBbmREcmF3KCk7CiAgICAgICAgfQogICAgICAgIHJldHVybiBleGVjdXRlZDsKICAgIH0KCiAgICBmdW5jdGlvbiBzY2llbnRpZmljV3JpdGVTdGF0dXMoaW1wKSB7CiAgICAgICAgdmFyIG1hc3RlclN0YXR1";
    encoded = encoded + "cyA9IGltYWdlUHJvcGVydHkoaW1wLCAiQ1RMLlAxLm1hc3Rlcl9waXhlbF9oYXNoX3N0YXR1cyIsICJOT1RfVkVSSUZJRUQiKTsKICAgICAgICB2YXIgc291cmNlU3RhdHVzID0gaW1hZ2VQcm9wZXJ0eShpbXAsICJDVEwuUDEuc291cmNlX2hhc2hfc3RhdHVzIiwgIk5PVF9WRVJJRklFRCIpOwogICAgICAgIGlmIChp";
    encoded = encoded + "bWFnZVByb3BlcnR5KGltcCwgIkNUTC5QMS5yb2xsYmFja19xdWFyYW50aW5lIiwgIklOQUNUSVZFIikgPT09ICJBQ1RJVkUiKSB7CiAgICAgICAgICAgIHJldHVybiAiTk9UX1ZFUklGSUVEIjsKICAgICAgICB9CiAgICAgICAgaWYgKG1hc3RlclN0YXR1cyA9PT0gIk1JU01BVENIIiB8fCBzb3VyY2VTdGF0dXMgPT09";
    encoded = encoded + "ICJNSVNNQVRDSCIpIHsKICAgICAgICAgICAgcmV0dXJuICJNSVNNQVRDSCI7CiAgICAgICAgfQogICAgICAgIGlmIChtYXN0ZXJTdGF0dXMgPT09ICJWRVJJRklFRCIgJiYgc291cmNlU3RhdHVzID09PSAiVkVSSUZJRUQiKSB7CiAgICAgICAgICAgIHJldHVybiAiVkVSSUZJRUQiOwogICAgICAgIH0KICAgICAgICBy";
    encoded = encoded + "ZXR1cm4gIk5PVF9WRVJJRklFRCI7CiAgICB9CgogICAgZnVuY3Rpb24gc2NpZW50aWZpY1dyaXRlQWxsb3dlZChpbXApIHsKICAgICAgICByZXR1cm4gc2NpZW50aWZpY1dyaXRlU3RhdHVzKGltcCkgPT09ICJWRVJJRklFRCI7CiAgICB9CgogICAgZnVuY3Rpb24gcmVtb3ZlTGVnYWN5TGlzdGVuZXIoaW1wLCBjYW52";
    encoded = encoded + "YXMsIHdpbmRvdywga2V5LCBraW5kKSB7CiAgICAgICAgdmFyIGxpc3RlbmVyID0gaW1wLmdldFByb3BlcnR5KGtleSk7CiAgICAgICAgaWYgKGxpc3RlbmVyID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuOwogICAgICAgIH0KICAgICAgICB0cnkgewogICAgICAgICAgICBpZiAoa2luZCA9PT0gIndoZWVsIikg";
    encoded = encoded + "ewogICAgICAgICAgICAgICAgY2FudmFzLnJlbW92ZU1vdXNlV2hlZWxMaXN0ZW5lcihsaXN0ZW5lcik7CiAgICAgICAgICAgIH0gZWxzZSBpZiAoa2luZCA9PT0gIm1vdXNlIikgewogICAgICAgICAgICAgICAgY2FudmFzLnJlbW92ZU1vdXNlTGlzdGVuZXIobGlzdGVuZXIpOwogICAgICAgICAgICB9IGVsc2UgaWYg";
    encoded = encoded + "KGtpbmQgPT09ICJtb3Rpb24iKSB7CiAgICAgICAgICAgICAgICBjYW52YXMucmVtb3ZlTW91c2VNb3Rpb25MaXN0ZW5lcihsaXN0ZW5lcik7CiAgICAgICAgICAgIH0gZWxzZSBpZiAoa2luZCA9PT0gImtleSIpIHsKICAgICAgICAgICAgICAgIGNhbnZhcy5yZW1vdmVLZXlMaXN0ZW5lcihsaXN0ZW5lcik7CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICBpZiAod2luZG93ICE9IG51bGwpIHsKICAgICAgICAgICAgICAgICAgICB3aW5kb3cucmVtb3ZlS2V5TGlzdGVuZXIobGlzdGVuZXIpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9CiAgICAgICAgfSBjYXRjaCAoaWdub3JlZCkgewogICAgICAgICAgICAvLyBSZW1vdmFsIGlzIGlkZW1w";
    encoded = encoded + "b3RlbnQ7IHN0YWxlIGxpc3RlbmVycyBhcmUgc3RpbGwgZ2VuZXJhdGlvbi1nYXRlZC4KICAgICAgICB9CiAgICAgICAgaW1wLnNldFByb3BlcnR5KGtleSwgbnVsbCk7CiAgICB9CgogICAgZnVuY3Rpb24gYmVnaW5UZWFyZG93blNuYXBzaG90KHN0YXRlKSB7CiAgICAgICAgcnVudGltZVN0YXRlTG9jay5sb2NrKCk7";
    encoded = encoded + "CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgaWYgKHN0YXRlLmNsb3NlZCA9PT0gdHJ1ZSkgewogICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJURUFSRE9XTl9BTFJFQURZX0lOX1BST0dSRVNTIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgc3RhdGUuY2xvc2VkID0gdHJ1ZTsKICAgICAgICAgICAg";
    encoded = encoded + "cmV0dXJuIHsKICAgICAgICAgICAgICAgIHBlbmRpbmdfb3duZXI6IHN0YXRlLnBlbmRpbmdSb2xsYmFja093bmVyLAogICAgICAgICAgICAgICAgaW5fZmxpZ2h0X293bmVyczogc3RhdGUuaW5GbGlnaHRSb2xsYmFja093bmVycy5zbGljZSgwKSwKICAgICAgICAgICAgICAgIHF1ZXVlX3Nsb3RzOiBzdGF0ZS5xdWV1";
    encoded = encoded + "ZVNsb3RzLnNsaWNlKDApCiAgICAgICAgICAgIH07CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgcnVudGltZVN0YXRlTG9jay51bmxvY2soKTsKICAgICAgICB9CiAgICB9CgogICAgZnVuY3Rpb24gc2FtZUV4ZWN1dG9yRnV0dXJlKGxlZnQsIHJpZ2h0KSB7CiAgICAgICAgaWYgKGxlZnQgPT0gbnVsbCB8";
    encoded = encoded + "fCByaWdodCA9PSBudWxsKSB7CiAgICAgICAgICAgIHJldHVybiBmYWxzZTsKICAgICAgICB9CiAgICAgICAgaWYgKGxlZnQgPT09IHJpZ2h0KSB7CiAgICAgICAgICAgIHJldHVybiB0cnVlOwogICAgICAgIH0KICAgICAgICB0cnkgewogICAgICAgICAgICByZXR1cm4gbGVmdC5lcXVhbHMocmlnaHQpID09PSB0cnVl";
    encoded = encoded + "OwogICAgICAgIH0gY2F0Y2ggKGlnbm9yZWRGdXR1cmVFcXVhbGl0eSkgewogICAgICAgICAgICByZXR1cm4gZmFsc2U7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIHJlY29uY2lsZUFiYW5kb25lZFF1ZXVlU2xvdHMoc3RhdGUsIHNuYXBzaG90U2xvdHMsIGFiYW5kb25lZFRhc2tzKSB7CiAgICAgICAgdmFy";
    encoded = encoded + "IG1hdGNoZWQgPSBbXTsKICAgICAgICB2YXIgYWJhbmRvbmVkQ291bnQ7CiAgICAgICAgdmFyIGk7CiAgICAgICAgdmFyIGo7CiAgICAgICAgdmFyIGZvdW5kOwogICAgICAgIHZhciB0YXNrOwogICAgICAgIGlmIChhYmFuZG9uZWRUYXNrcyA9PSBudWxsKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiRVhF";
    encoded = encoded + "Q1VUT1JfU0hVVERPV05fUkVTVUxUX0FCU0VOVCIpOwogICAgICAgIH0KICAgICAgICBhYmFuZG9uZWRDb3VudCA9IE51bWJlcihhYmFuZG9uZWRUYXNrcy5zaXplKCkpOwogICAgICAgIGZvciAoaSA9IDA7IGkgPCBhYmFuZG9uZWRDb3VudDsgaSArPSAxKSB7CiAgICAgICAgICAgIHRhc2sgPSBhYmFuZG9uZWRUYXNr";
    encoded = encoded + "cy5nZXQoaSk7CiAgICAgICAgICAgIGZvdW5kID0gLTE7CiAgICAgICAgICAgIGZvciAoaiA9IDA7IGogPCBzbmFwc2hvdFNsb3RzLmxlbmd0aDsgaiArPSAxKSB7CiAgICAgICAgICAgICAgICBpZiAoc2FtZUV4ZWN1dG9yRnV0dXJlKHNuYXBzaG90U2xvdHNbal0uZnV0dXJlLCB0YXNrKSkgewogICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgIGlmIChmb3VuZCA+PSAwKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQUJBTkRPTkVEX0ZVVFVSRV9EVVBMSUNBVEVfU0xPVCIpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICBmb3VuZCA9IGo7CiAgICAgICAgICAgICAgICB9CiAgICAgICAg";
    encoded = encoded + "ICAgIH0KICAgICAgICAgICAgaWYgKGZvdW5kIDwgMCB8fCBzbmFwc2hvdFNsb3RzW2ZvdW5kXS5hY2NlcHRlZCAhPT0gdHJ1ZSB8fAogICAgICAgICAgICAgICAgICAgIHNuYXBzaG90U2xvdHNbZm91bmRdLndvcmtlcl9lbnRlcmVkID09PSB0cnVlKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIkFC";
    encoded = encoded + "QU5ET05FRF9GVVRVUkVfV0lUSE9VVF9FWEFDVF9RVUVVRV9TTE9UIik7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgZm9yIChqID0gMDsgaiA8IG1hdGNoZWQubGVuZ3RoOyBqICs9IDEpIHsKICAgICAgICAgICAgICAgIGlmIChtYXRjaGVkW2pdID09PSBzbmFwc2hvdFNsb3RzW2ZvdW5kXSkgewogICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiQUJBTkRPTkVEX0ZVVFVSRV9ET1VCTEVfUkVDT05DSUxJQVRJT04iKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgfQogICAgICAgICAgICBtYXRjaGVkLnB1c2goc25hcHNob3RTbG90c1tmb3VuZF0pOwogICAgICAgIH0KICAgICAgICBmb3IgKGkgPSAwOyBp";
    encoded = encoded + "IDwgbWF0Y2hlZC5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICBzZXR0bGVRdWV1ZVNsb3RBY2NvdW50aW5nKHN0YXRlLCBtYXRjaGVkW2ldLCAiRVhFQ1VUT1JfU0hVVERPV05fQUJBTkRPTkVEIik7CiAgICAgICAgfQogICAgICAgIHJldHVybiBtYXRjaGVkLmxlbmd0aDsKICAgIH0KCiAgICBmdW5jdGlvbiB0";
    encoded = encoded + "ZWFyZG93blN0YXRlUXVpZXNjZW50KHN0YXRlLCByZXF1aXJlRXhlY3V0b3JUZXJtaW5hdGlvbikgewogICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2subG9jaygpOwogICAgICAgIHRyeSB7CiAgICAgICAgICAgIHJldHVybiBzdGF0ZS5jbG9zZWQgPT09IHRydWUgJiYgc3RhdGUucGVuZGluZ1JvbGxiYWNrT3duZXIgPT0g";
    encoded = encoded + "bnVsbCAmJgogICAgICAgICAgICAgICAgc3RhdGUuaW5GbGlnaHRSb2xsYmFja093bmVycy5sZW5ndGggPT09IDAgJiYKICAgICAgICAgICAgICAgIHN0YXRlLnF1ZXVlU2xvdHMubGVuZ3RoID09PSAwICYmCiAgICAgICAgICAgICAgICAocmVxdWlyZUV4ZWN1dG9yVGVybWluYXRpb24gIT09IHRydWUgfHwgc3RhdGUu";
    encoded = encoded + "ZXhlY3V0b3IuaXNUZXJtaW5hdGVkKCkpOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIGF3YWl0RXhlY3V0b3JUZXJtaW5hdGlvbihzdGF0ZSkgewogICAgICAgIHJldHVybiBzdGF0ZS5leGVjdXRvci5h";
    encoded = encoded + "d2FpdFRlcm1pbmF0aW9uKDIsIFRpbWVVbml0LlNFQ09ORFMpID09PSB0cnVlOwogICAgfQoKICAgIGZ1bmN0aW9uIHF1YXJhbnRpbmVUZWFyZG93bihpbXAsIHRlYXJkb3duU25hcHNob3QsIHJlYXNvbikgewogICAgICAgIHZhciBvd25lciA9IHRlYXJkb3duU25hcHNob3QgPT0gbnVsbCA/IG51bGwgOiB0ZWFyZG93";
    encoded = encoded + "blNuYXBzaG90LnBlbmRpbmdfb3duZXI7CiAgICAgICAgaWYgKG93bmVyID09IG51bGwgJiYgdGVhcmRvd25TbmFwc2hvdCAhPSBudWxsICYmCiAgICAgICAgICAgICAgICB0ZWFyZG93blNuYXBzaG90LmluX2ZsaWdodF9vd25lcnMubGVuZ3RoID4gMCkgewogICAgICAgICAgICBvd25lciA9IHRlYXJkb3duU25hcHNo";
    encoded = encoded + "b3QuaW5fZmxpZ2h0X293bmVyc1swXTsKICAgICAgICB9CiAgICAgICAgcXVhcmFudGluZVJvbGxiYWNrKAogICAgICAgICAgICBvd25lciB8fCB7aW1wOiBpbXAsIGV4cGVjdGVkX3NuYXBzaG90OiBudWxsfSwKICAgICAgICAgICAgIkxJU1RFTkVSX1RFQVJET1dOX0ZBSUxfQ0xPU0VEXyIgKyBTdHJpbmcocmVhc29u";
    encoded = encoded + "KQogICAgICAgICk7CiAgICB9CgogICAgZnVuY3Rpb24gdGVhcmRvd24oaW1wKSB7CiAgICAgICAgdmFyIHN0YXRlOwogICAgICAgIHZhciB3aW5kb3c7CiAgICAgICAgdmFyIGNhbnZhczsKICAgICAgICB2YXIgb2xkR2VuZXJhdGlvbjsKICAgICAgICB2YXIgaTsKICAgICAgICB2YXIgdGVhcmRvd25TbmFwc2hvdCA9";
    encoded = encoded + "IG51bGw7CiAgICAgICAgdmFyIGFiYW5kb25lZFRhc2tzOwogICAgICAgIHZhciBvbkVkdDsKICAgICAgICB2YXIgdGVybWluYXRlZCA9IGZhbHNlOwogICAgICAgIHZhciB0ZWFyZG93blN1Y2NlZWRlZCA9IHRydWU7CiAgICAgICAgdmFyIGZhaWx1cmVEZXRhaWwgPSAiTElTVEVORVJTX1VOSU5TVEFMTEVEIjsKICAg";
    encoded = encoded + "ICAgICBpZiAoaW1wID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuOwogICAgICAgIH0KICAgICAgICBzdGF0ZSA9IHJlZ2lzdHJ5R2V0KFNUQVRFX0tFWSk7CiAgICAgICAgb2xkR2VuZXJhdGlvbiA9IGltYWdlUHJvcGVydHkoaW1wLCAiQ1RMLlAxLmdlbmVyYXRpb25fdG9rZW4iLCAiMCIpOwogICAgICAgIHdp";
    encoded = encoded + "bmRvdyA9IGltcC5nZXRXaW5kb3coKTsKICAgICAgICBjYW52YXMgPSB3aW5kb3cgPT0gbnVsbCA/IG51bGwgOiB3aW5kb3cuZ2V0Q2FudmFzKCk7CiAgICAgICAgaWYgKHN0YXRlICE9IG51bGwpIHsKICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgIHRlYXJkb3duU25hcHNob3QgPSBiZWdpblRlYXJkb3du";
    encoded = encoded + "U25hcHNob3Qoc3RhdGUpOwogICAgICAgICAgICB9IGNhdGNoIChzbmFwc2hvdEZhaWx1cmUpIHsKICAgICAgICAgICAgICAgIHRlYXJkb3duU3VjY2VlZGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICBmYWlsdXJlRGV0YWlsID0gIlRFQVJET1dOX0FUT01JQ19TTkFQU0hPVF9GQUlMRUQiOwogICAgICAgICAgICB9";
    encoded = encoded + "CiAgICAgICAgICAgIGlmIChzdGF0ZS5pbWFnZUxpc3RlbmVyICE9IG51bGwpIHsKICAgICAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgSW1hZ2VQbHVzLnJlbW92ZUltYWdlTGlzdGVuZXIoc3RhdGUuaW1hZ2VMaXN0ZW5lcik7CiAgICAgICAgICAgICAgICB9IGNhdGNoIChpZ25vcmVkSW1hZ2VM";
    encoded = encoded + "aXN0ZW5lcikge30KICAgICAgICAgICAgICAgIHN0YXRlLmltYWdlTGlzdGVuZXIgPSBudWxsOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGZvciAoaSA9IDA7IGkgPCBzdGF0ZS50aW1lcnMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgc3RhdGUudGlt";
    encoded = encoded + "ZXJzW2ldLnN0b3AoKTsKICAgICAgICAgICAgICAgIH0gY2F0Y2ggKGlnbm9yZWRUaW1lcikge30KICAgICAgICAgICAgfQogICAgICAgICAgICBpZiAoY2FudmFzICE9IG51bGwpIHsKICAgICAgICAgICAgICAgIGZvciAoaSA9IDA7IGkgPCBzdGF0ZS5saXN0ZW5lcnMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgICAgICBpZiAoc3RhdGUubGlzdGVuZXJzW2ldLmtpbmQgPT09ICJ3aGVlbCIpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGNhbnZhcy5yZW1vdmVNb3VzZVdoZWVsTGlzdGVuZXIoc3RhdGUubGlzdGVuZXJzW2ldLmxpc3RlbmVyKTsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgfSBlbHNlIGlmIChzdGF0ZS5saXN0ZW5lcnNbaV0ua2luZCA9PT0gIm1vdXNlIikgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgY2FudmFzLnJlbW92ZU1vdXNlTGlzdGVuZXIoc3RhdGUubGlzdGVuZXJzW2ldLmxpc3RlbmVyKTsKICAgICAgICAgICAgICAgICAgICAgICAgfSBl";
    encoded = encoded + "bHNlIGlmIChzdGF0ZS5saXN0ZW5lcnNbaV0ua2luZCA9PT0gImtleSIpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGNhbnZhcy5yZW1vdmVLZXlMaXN0ZW5lcihzdGF0ZS5saXN0ZW5lcnNbaV0ubGlzdGVuZXIpOwogICAgICAgICAgICAgICAgICAgICAgICAgICAgaWYgKHdpbmRvdyAhPSBudWxsKSB7CiAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgd2luZG93LnJlbW92ZUtleUxpc3RlbmVyKHN0YXRlLmxpc3RlbmVyc1tpXS5saXN0ZW5lcik7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB9IGNhdGNoIChpZ25vcmVkTGlz";
    encoded = encoded + "dGVuZXIpIHt9CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgIH0KICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgIGFiYW5kb25lZFRhc2tzID0gc3RhdGUuZXhlY3V0b3Iuc2h1dGRvd25Ob3coKTsKICAgICAgICAgICAgfSBjYXRjaCAoZXhlY3V0b3JGYWlsdXJlKSB7CiAgICAgICAgICAgICAgICB0";
    encoded = encoded + "ZWFyZG93blN1Y2NlZWRlZCA9IGZhbHNlOwogICAgICAgICAgICAgICAgZmFpbHVyZURldGFpbCA9ICJFWEVDVVRPUl9TSFVURE9XTl9GQUlMRUQiOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGlmICh0ZWFyZG93blNuYXBzaG90ICE9IG51bGwpIHsKICAgICAgICAgICAgICAgIGlmICh0ZWFyZG93blNuYXBzaG90";
    encoded = encoded + "LnBlbmRpbmdfb3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgICAgIGlmICghc2V0dGxlUm9sbGJhY2tPd25lcigKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICB0ZWFyZG93blNuYXBzaG90LnBlbmRpbmdfb3duZXIsCiAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgIkxJU1RFTkVSX1RFQVJET1dOX1BFTkRJTkciKSkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgdGVhcmRvd25TdWNjZWVkZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGZhaWx1cmVEZXRhaWwgPSAiVEVBUkRPV05fUEVORElOR19ST0xMQkFDS19GQUlM";
    encoded = encoded + "RUQiOwogICAgICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgfSBjYXRjaCAocGVuZGluZ1NldHRsZW1lbnRGYWlsdXJlKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIHRlYXJkb3duU3VjY2VlZGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICAgICAgICAgIGZhaWx1cmVEZXRhaWwgPSAi";
    encoded = encoded + "VEVBUkRPV05fUEVORElOR19ST0xMQkFDS19GQUlMRUQiOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgICAgICBjbGVhclBlbmRpbmdSb2xsYmFjayhzdGF0ZSwgdGVhcmRvd25TbmFwc2hvdC5wZW5kaW5nX293bmVyKTsKICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICB9IGNhdGNoIChwZW5kaW5nQ2xlYXJGYWlsdXJlKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIHRlYXJkb3duU3VjY2VlZGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICAgICAgICAgIGZhaWx1cmVEZXRhaWwgPSAiVEVBUkRPV05fUEVORElOR19DTEVBUl9GQUlMRUQiOwogICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgIH0KICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGZvciAoaSA9IDA7IGkgPCB0ZWFyZG93blNuYXBzaG90LmluX2ZsaWdodF9vd25lcnMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgICAgICBpZiAoIXNldHRsZVJvbGxiYWNrT3du";
    encoded = encoded + "ZXIoCiAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgdGVhcmRvd25TbmFwc2hvdC5pbl9mbGlnaHRfb3duZXJzW2ldLAogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICJMSVNURU5FUl9URUFSRE9XTl9JTl9GTElHSFQiKSkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgdGVhcmRvd25TdWNj";
    encoded = encoded + "ZWVkZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGZhaWx1cmVEZXRhaWwgPSAiVEVBUkRPV05fSU5fRkxJR0hUX1JPTExCQUNLX0ZBSUxFRCI7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB9IGNhdGNoIChpbkZsaWdodFNldHRsZW1lbnRGYWlsdXJlKSB7";
    encoded = encoded + "CiAgICAgICAgICAgICAgICAgICAgICAgIHRlYXJkb3duU3VjY2VlZGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICAgICAgICAgIGZhaWx1cmVEZXRhaWwgPSAiVEVBUkRPV05fSU5fRkxJR0hUX1JPTExCQUNLX0ZBSUxFRCI7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIHRyeSB7CiAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgIHJlbGVhc2VSb2xsYmFja093bmVyKHN0YXRlLCB0ZWFyZG93blNuYXBzaG90LmluX2ZsaWdodF9vd25lcnNbaV0pOwogICAgICAgICAgICAgICAgICAgIH0gY2F0Y2ggKGluRmxpZ2h0UmVsZWFzZUZhaWx1cmUpIHsKICAgICAgICAgICAgICAgICAgICAgICAgdGVhcmRvd25TdWNj";
    encoded = encoded + "ZWVkZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgICAgICAgICAgZmFpbHVyZURldGFpbCA9ICJURUFSRE9XTl9JTl9GTElHSFRfUkVMRUFTRV9GQUlMRUQiOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgcmVjb25j";
    encoded = encoded + "aWxlQWJhbmRvbmVkUXVldWVTbG90cygKICAgICAgICAgICAgICAgICAgICAgICAgc3RhdGUsIHRlYXJkb3duU25hcHNob3QucXVldWVfc2xvdHMsIGFiYW5kb25lZFRhc2tzCiAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgIH0gY2F0Y2ggKGFiYW5kb25lZFJlY29uY2lsaWF0aW9uRmFpbHVyZSkg";
    encoded = encoded + "ewogICAgICAgICAgICAgICAgICAgIHRlYXJkb3duU3VjY2VlZGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICAgICAgZmFpbHVyZURldGFpbCA9ICJBQkFORE9ORURfUVVFVUVfUkVDT05DSUxJQVRJT05fRkFJTEVEIjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgfQogICAgICAgICAgICBvbkVkdCA9IFN3";
    encoded = encoded + "aW5nVXRpbGl0aWVzLmlzRXZlbnREaXNwYXRjaFRocmVhZCgpOwogICAgICAgICAgICBpZiAoIW9uRWR0KSB7CiAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgIHRlcm1pbmF0ZWQgPSBhd2FpdEV4ZWN1dG9yVGVybWluYXRpb24oc3RhdGUpOwogICAgICAgICAgICAgICAgfSBjYXRjaCAodGVy";
    encoded = encoded + "bWluYXRpb25GYWlsdXJlKSB7CiAgICAgICAgICAgICAgICAgICAgdGVybWluYXRlZCA9IGZhbHNlOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgaWYgKCF0ZXJtaW5hdGVkKSB7CiAgICAgICAgICAgICAgICAgICAgdGVhcmRvd25TdWNjZWVkZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgICAgICBm";
    encoded = encoded + "YWlsdXJlRGV0YWlsID0gIkVYRUNVVE9SX1RFUk1JTkFUSU9OX1RJTUVPVVQiOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgaWYgKCF0ZWFyZG93blN0YXRlUXVpZXNjZW50KHN0YXRlLCB0cnVlKSkgewogICAgICAgICAgICAgICAgICAgIHRlYXJkb3duU3VjY2VlZGVkID0gZmFsc2U7CiAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgZmFpbHVyZURldGFpbCA9ICJURUFSRE9XTl9OT1RfUVVJRVNDRU5UIjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgfSBlbHNlIHsKICAgICAgICAgICAgICAgIC8vIE9uIHRoZSBFRFQgd2UgY2Fubm90IHdhaXQuICBFeGFjdCBzbG90IGN1c3RvZHkgcHJvdmVzIHRoYXQKICAgICAgICAg";
    encoded = encoded + "ICAgICAgIC8vIGV2ZXJ5IGFjY2VwdGVkIHRhc2sgaXMgZWl0aGVyIHJlY29uY2lsZWQgYXMgbmV2ZXItc3RhcnRlZCBvcgogICAgICAgICAgICAgICAgLy8gc3RpbGwgcHJlc2VudCBhcyBhbiBhY3RpdmUvcnVubmluZyBtdXRhdG9yLgogICAgICAgICAgICAgICAgdGVybWluYXRlZCA9IHRlYXJkb3duU3RhdGVRdWll";
    encoded = encoded + "c2NlbnQoc3RhdGUsIGZhbHNlKTsKICAgICAgICAgICAgICAgIGlmICghdGVybWluYXRlZCkgewogICAgICAgICAgICAgICAgICAgIHRlYXJkb3duU3VjY2VlZGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICAgICAgZmFpbHVyZURldGFpbCA9ICJFRFRfVEVBUkRPV05fUlVOTklOR19NVVRBVE9SIjsKICAgICAgICAg";
    encoded = encoded + "ICAgICAgIH0KICAgICAgICAgICAgfQogICAgICAgICAgICBpZiAoIXRlYXJkb3duU3VjY2VlZGVkKSB7CiAgICAgICAgICAgICAgICBxdWFyYW50aW5lVGVhcmRvd24oaW1wLCB0ZWFyZG93blNuYXBzaG90LCBmYWlsdXJlRGV0YWlsKTsKICAgICAgICAgICAgfQogICAgICAgICAgICB0cnkgewogICAgICAgICAgICAg";
    encoded = encoded + "ICAgdGVsZW1ldHJ5UmVjb3JkKHsKICAgICAgICAgICAgICAgICAgICBldmVudF90eXBlOiAiTElTVEVORVJfVU5JTlNUQUxMRUQiLCBpbXA6IGltcCwKICAgICAgICAgICAgICAgICAgICBvcGVyYXRpb246ICJMSVNURU5FUl9MSUZFQ1lDTEUiLCBwaGFzZTogIkNPTVBMRVRFIiwKICAgICAgICAgICAgICAgICAgICBz";
    encoded = encoded + "dGF0dXM6IHRlYXJkb3duU3VjY2VlZGVkID8gIlNVQ0NFRURFRCIgOiAiRkFJTEVEIiwKICAgICAgICAgICAgICAgICAgICBsaXN0ZW5lcl9nZW5lcmF0aW9uOiBTdHJpbmcoc3RhdGUubGlzdGVuZXJHZW5lcmF0aW9uIHx8IG9sZEdlbmVyYXRpb24pLAogICAgICAgICAgICAgICAgICAgIGRldGFpbF9jb2RlOiB0ZWFy";
    encoded = encoded + "ZG93blN1Y2NlZWRlZCA/CiAgICAgICAgICAgICAgICAgICAgICAgICJMSVNURU5FUlNfVU5JTlNUQUxMRUQiIDogIkxJU1RFTkVSU19VTklOU1RBTExfUVVBUkFOVElORUQiCiAgICAgICAgICAgICAgICB9KTsKICAgICAgICAgICAgfSBjYXRjaCAodW5pbnN0YWxsVGVsZW1ldHJ5RmFpbHVyZSkgewogICAgICAgICAg";
    encoded = encoded + "ICAgICAgdGVhcmRvd25TdWNjZWVkZWQgPSBmYWxzZTsKICAgICAgICAgICAgICAgIGZhaWx1cmVEZXRhaWwgPSAiVU5JTlNUQUxMX1RFUk1JTkFMX1RFTEVNRVRSWV9GQUlMRUQiOwogICAgICAgICAgICAgICAgcXVhcmFudGluZVRlYXJkb3duKGltcCwgdGVhcmRvd25TbmFwc2hvdCwgZmFpbHVyZURldGFpbCk7CiAg";
    encoded = encoded + "ICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgIHRlbGVtZXRyeVJlY29yZCh7CiAgICAgICAgICAgICAgICAgICAgICAgIGV2ZW50X3R5cGU6ICJMSVNURU5FUl9VTklOU1RBTExFRCIsIGltcDogaW1wLAogICAgICAgICAgICAgICAgICAgICAgICBvcGVyYXRpb246ICJMSVNURU5FUl9MSUZFQ1lD";
    encoded = encoded + "TEUiLCBwaGFzZTogIkNPTVBMRVRFIiwKICAgICAgICAgICAgICAgICAgICAgICAgc3RhdHVzOiAiRkFJTEVEIiwKICAgICAgICAgICAgICAgICAgICAgICAgbGlzdGVuZXJfZ2VuZXJhdGlvbjogU3RyaW5nKAogICAgICAgICAgICAgICAgICAgICAgICAgICAgc3RhdGUubGlzdGVuZXJHZW5lcmF0aW9uIHx8IG9sZEdl";
    encoded = encoded + "bmVyYXRpb24KICAgICAgICAgICAgICAgICAgICAgICAgKSwKICAgICAgICAgICAgICAgICAgICAgICAgZGV0YWlsX2NvZGU6ICJMSVNURU5FUlNfVU5JTlNUQUxMX1FVQVJBTlRJTkVEIgogICAgICAgICAgICAgICAgICAgIH0pOwogICAgICAgICAgICAgICAgfSBjYXRjaCAoaWdub3JlZEZhaWxlZFVuaW5zdGFsbFRl";
    encoded = encoded + "bGVtZXRyeSkge30KICAgICAgICAgICAgfQogICAgICAgIH0KICAgICAgICBidW1wQ291bnRlcihpbXAsICJDVEwuUDEuZ2VuZXJhdGlvbl90b2tlbiIpOwogICAgICAgIHJlZ2lzdHJ5UHV0KFNUQVRFX0tFWSwgbnVsbCk7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KAogICAgICAgICAgICAiQ1RMLlAxLmxpc3RlbmVy";
    encoded = encoded + "c19zdGF0dXMiLAogICAgICAgICAgICB0ZWFyZG93blN1Y2NlZWRlZCA/ICJVTklOU1RBTExFRCIgOiAiVU5JTlNUQUxMRURfUVVBUkFOVElORUQiCiAgICAgICAgKTsKICAgICAgICByZXR1cm4gdGVhcmRvd25TdWNjZWVkZWQ7CiAgICB9CgogICAgZnVuY3Rpb24gaW5zdGFsbChpbXApIHsKICAgICAgICB2YXIgc3Rh";
    encoded = encoded + "dGU7CiAgICAgICAgdmFyIHdpbmRvdzsKICAgICAgICB2YXIgY2FudmFzOwogICAgICAgIHZhciBwcmVzcyA9IG51bGw7CiAgICAgICAgdmFyIHRpbWVyOwogICAgICAgIHZhciBtb3VzZUxpc3RlbmVyOwogICAgICAgIHZhciB3aGVlbExpc3RlbmVyOwogICAgICAgIHZhciBrZXlMaXN0ZW5lcjsKICAgICAgICB2YXIg";
    encoded = encoded + "Y2xvc2VMaXN0ZW5lcjsKICAgICAgICB2YXIgbGlzdGVuZXJHZW5lcmF0aW9uOwogICAgICAgIHZhciB0ZWFyZG93blN1Y2NlZWRlZDsKICAgICAgICBpZiAoaW1wID09IG51bGwpIHsKICAgICAgICAgICAgcmV0dXJuICJOT19JTUFHRSI7CiAgICAgICAgfQogICAgICAgIHdpbmRvdyA9IGltcC5nZXRXaW5kb3coKTsK";
    encoded = encoded + "ICAgICAgICBjYW52YXMgPSB3aW5kb3cgPT0gbnVsbCA/IG51bGwgOiB3aW5kb3cuZ2V0Q2FudmFzKCk7CiAgICAgICAgaWYgKGNhbnZhcyA9PSBudWxsKSB7CiAgICAgICAgICAgIHJldHVybiAiTk9fQ0FOVkFTIjsKICAgICAgICB9CiAgICAgICAgdGVhcmRvd25TdWNjZWVkZWQgPSB0ZWFyZG93bihpbXApID09PSB0";
    encoded = encoded + "cnVlOwogICAgICAgIHJlbW92ZUxlZ2FjeUxpc3RlbmVyKGltcCwgY2FudmFzLCB3aW5kb3csICJDYXZpdHlMaWdodFI4V2hlZWxMaXN0ZW5lciIsICJ3aGVlbCIpOwogICAgICAgIHJlbW92ZUxlZ2FjeUxpc3RlbmVyKGltcCwgY2FudmFzLCB3aW5kb3csICJDYXZpdHlMaWdodFI5V2hlZWxMaXN0ZW5lciIsICJ3aGVl";
    encoded = encoded + "bCIpOwogICAgICAgIHJlbW92ZUxlZ2FjeUxpc3RlbmVyKGltcCwgY2FudmFzLCB3aW5kb3csICJDYXZpdHlMaWdodFI4TW91c2VMaXN0ZW5lciIsICJtb3VzZSIpOwogICAgICAgIHJlbW92ZUxlZ2FjeUxpc3RlbmVyKGltcCwgY2FudmFzLCB3aW5kb3csICJDYXZpdHlMaWdodFI5TW91c2VMaXN0ZW5lciIsICJtb3Vz";
    encoded = encoded + "ZSIpOwogICAgICAgIHJlbW92ZUxlZ2FjeUxpc3RlbmVyKGltcCwgY2FudmFzLCB3aW5kb3csICJDYXZpdHlMaWdodFI4TW90aW9uTGlzdGVuZXIiLCAibW90aW9uIik7CiAgICAgICAgcmVtb3ZlTGVnYWN5TGlzdGVuZXIoaW1wLCBjYW52YXMsIHdpbmRvdywgIkNhdml0eUxpZ2h0UjlNb3Rpb25MaXN0ZW5lciIsICJt";
    encoded = encoded + "b3Rpb24iKTsKICAgICAgICByZW1vdmVMZWdhY3lMaXN0ZW5lcihpbXAsIGNhbnZhcywgd2luZG93LCAiQ2F2aXR5TGlnaHRSOEtleUxpc3RlbmVyIiwgImtleSIpOwogICAgICAgIHJlbW92ZUxlZ2FjeUxpc3RlbmVyKGltcCwgY2FudmFzLCB3aW5kb3csICJDYXZpdHlMaWdodFI5S2V5TGlzdGVuZXIiLCAia2V5Iik7";
    encoded = encoded + "CiAgICAgICAgaWYgKCF0ZWFyZG93blN1Y2NlZWRlZCkgewogICAgICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5saXN0ZW5lcnNfc3RhdHVzIiwgIklOU1RBTExfQkxPQ0tFRF9RVUFSQU5USU5FRCIpOwogICAgICAgICAgICByZXR1cm4gIlRFQVJET1dOX0ZBSUxFRF9RVUFSQU5USU5FRCI7CiAgICAgICAg";
    encoded = encoded + "fQogICAgICAgIHN0YXRlID0gcXVldWVGb3IoaW1wKTsKICAgICAgICBydW50aW1lU3RhdGVMb2NrLmxvY2tJbnRlcnJ1cHRpYmx5KCk7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgbGlzdGVuZXJHZW5lcmF0aW9uID0gcGFyc2VJbnQoaW1hZ2VQcm9wZXJ0eShpbXAsICJDVEwuUDEuZ2VuZXJhdGlvbl90b2tlbiIs";
    encoded = encoded + "ICIwIiksIDEwKTsKICAgICAgICAgICAgaWYgKCFpc0Zpbml0ZShsaXN0ZW5lckdlbmVyYXRpb24pIHx8IGxpc3RlbmVyR2VuZXJhdGlvbiA8IDEpIHsKICAgICAgICAgICAgICAgIGxpc3RlbmVyR2VuZXJhdGlvbiA9IDE7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKGxpc3RlbmVyR2VuZXJhdGlvbiA8PSBy";
    encoded = encoded + "dW50aW1lTGlzdGVuZXJHZW5lcmF0aW9uQ291bnRlcikgewogICAgICAgICAgICAgICAgbGlzdGVuZXJHZW5lcmF0aW9uID0gcnVudGltZUxpc3RlbmVyR2VuZXJhdGlvbkNvdW50ZXIgKyAxOwogICAgICAgICAgICB9CiAgICAgICAgICAgIHJ1bnRpbWVMaXN0ZW5lckdlbmVyYXRpb25Db3VudGVyID0gbGlzdGVuZXJH";
    encoded = encoded + "ZW5lcmF0aW9uOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIHJ1bnRpbWVTdGF0ZUxvY2sudW5sb2NrKCk7CiAgICAgICAgfQogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmdlbmVyYXRpb25fdG9rZW4iLCBTdHJpbmcobGlzdGVuZXJHZW5lcmF0aW9uKSk7CiAgICAgICAgc3RhdGUubGlzdGVu";
    encoded = encoded + "ZXJHZW5lcmF0aW9uID0gU3RyaW5nKGxpc3RlbmVyR2VuZXJhdGlvbik7CiAgICAgICAgdGltZXIgPSBuZXcgVGltZXIoMzUwLCBhZGFwdGVyKEFjdGlvbkxpc3RlbmVyLCB7CiAgICAgICAgICAgIGFjdGlvblBlcmZvcm1lZDogZnVuY3Rpb24gKCkgewogICAgICAgICAgICAgICAgdmFyIHBlbmRpbmcgPSBzbmFwc2hv";
    encoded = encoded + "dFBlbmRpbmdSb2xsYmFjayhzdGF0ZSk7CiAgICAgICAgICAgICAgICB2YXIgc25hcHNob3QgPSBwZW5kaW5nLnNuYXBzaG90OwogICAgICAgICAgICAgICAgdmFyIHJvbGxiYWNrT3duZXIgPSBwZW5kaW5nLm93bmVyOwogICAgICAgICAgICAgICAgdmFyIHJlcXVlc3RJZCA9IHBlbmRpbmcucmVxdWVzdF9pZDsKICAg";
    encoded = encoded + "ICAgICAgICAgICAgIHZhciB0cmFuc2FjdGlvbklkID0gcGVuZGluZy50cmFuc2FjdGlvbl9pZDsKICAgICAgICAgICAgICAgIHZhciBkZXRhaWxDb2RlID0gcGVuZGluZy5kZXRhaWxfY29kZTsKICAgICAgICAgICAgICAgIHZhciBjYWxsYmFja0FjY2VwdGVkID0gZmFsc2U7CiAgICAgICAgICAgICAgICB0cnkgewog";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgIGNhbGxiYWNrQWNjZXB0ZWQgPSB0ZWxlbWV0cnlMaXN0ZW5lckNhbGxiYWNrKAogICAgICAgICAgICAgICAgICAgICAgICBpbXAsIHN0YXRlLCBsaXN0ZW5lckdlbmVyYXRpb24sICJFRElUX1JPSSIsICJERUZFUlJFRF9USU1FUl9DQUxMQkFDSyIsCiAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgIHNuYXBzaG90LCByZXF1ZXN0SWQsIHRyYW5zYWN0aW9uSWQsIHRydWUKICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgIHRlbGVtZXRyeVJlY29yZCh7CiAgICAgICAgICAgICAgICAgICAgICAgIGV2ZW50X3R5cGU6ICJERUZFUlJFRF9DQUxMQkFDSyIsIGltcDogaW1wLAogICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICBvd25lcl9jb250ZXh0OiBzbmFwc2hvdCwgb3BlcmF0aW9uOiAiRURJVF9ST0kiLCBwaGFzZTogIkRJU1BBVENIRUQiLAogICAgICAgICAgICAgICAgICAgICAgICByZXF1ZXN0X2lkOiByZXF1ZXN0SWQsIHRyYW5zYWN0aW9uX2lkOiB0cmFuc2FjdGlvbklkLAogICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICBzdGF0dXM6IGNhbGxiYWNrQWNjZXB0ZWQgPyAiQUNDRVBURUQiIDogIlJFSkVDVEVEX0dFTkVSQVRJT04iLAogICAgICAgICAgICAgICAgICAgICAgICBsaXN0ZW5lcl9nZW5lcmF0aW9uOiBTdHJpbmcobGlzdGVuZXJHZW5lcmF0aW9uKSwKICAgICAgICAgICAgICAgICAgICAgICAgY2FsbGJhY2tfZGVj";
    encoded = encoded + "aXNpb246IGNhbGxiYWNrQWNjZXB0ZWQgPyAiQUNDRVBURUQiIDogIlJFSkVDVEVEX0dFTkVSQVRJT04iLAogICAgICAgICAgICAgICAgICAgICAgICBkZXRhaWxfY29kZTogZGV0YWlsQ29kZSB8fCAiSU5URVJBQ1RJVkVfRURJVF9USU1FUiIKICAgICAgICAgICAgICAgICAgICB9KTsKICAgICAgICAgICAgICAgIH0g";
    encoded = encoded + "Y2F0Y2ggKGNhbGxiYWNrVGVsZW1ldHJ5RXJyb3IpIHsKICAgICAgICAgICAgICAgICAgICBpZiAocm9sbGJhY2tPd25lciAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIHNldHRsZVJvbGxiYWNrT3duZXIocm9sbGJhY2tPd25lciwgIkRFRkVSUkVEX0NBTExCQUNLX1RFTEVNRVRSWV9GQUlMRUQiKTsK";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgICAgY2xlYXJQZW5kaW5nUm9sbGJhY2soc3RhdGUsIHJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICBJSi5sb2coIkNUTCBQMSBkZWZlcnJlZCBjYWxsYmFjayB0ZWxlbWV0cnkgZmFpbGVkOiAiICsgY2FsbGJhY2tUZWxlbWV0";
    encoded = encoded + "cnlFcnJvcik7CiAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgaWYgKCFjYWxsYmFja0FjY2VwdGVkIHx8IHNuYXBzaG90ID09IG51bGwgfHwgcm9sbGJhY2tPd25lciA9PSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgaWYgKHJvbGxiYWNrT3duZXIg";
    encoded = encoded + "IT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKHJvbGxiYWNrT3duZXIsICJERUZFUlJFRF9DQUxMQkFDS19SRUpFQ1RFRCIpOwogICAgICAgICAgICAgICAgICAgICAgICBjbGVhclBlbmRpbmdSb2xsYmFjayhzdGF0ZSwgcm9sbGJhY2tPd25lcik7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgfSBlbHNlIGlmIChzbmFwc2hvdCAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIHF1YXJhbnRpbmVSb2xsYmFjaygKICAgICAgICAgICAgICAgICAgICAgICAgICAgIHtpbXA6IGltcCwgZXhwZWN0ZWRfc25hcHNob3Q6IHNuYXBzaG90fSwKICAgICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICJERUZFUlJFRF9DQUxMQkFDS19XSVRIT1VUX1JPTExCQUNLX09XTkVSIgogICAgICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "IHN1Ym1pdCgKICAgICAgICAgICAgICAgICAgICAgICAgc25hcHNob3QsICJJTlRFUkFDVElWRV9FRElUIiwKICAgICAgICAgICAgICAgICAgICAgICAgIkNhdml0eSBMaWdodCBQMSBpbnRlcm5hbDogY29uZmlybWFyIGVkaWNpb24iLCB0cnVlLCByb2xsYmFja093bmVyLAogICAgICAgICAgICAgICAgICAgICAgICB7";
    encoded = encoded + "CiAgICAgICAgICAgICAgICAgICAgICAgICAgICByZXF1ZXN0X2lkOiByZXF1ZXN0SWQsCiAgICAgICAgICAgICAgICAgICAgICAgICAgICB0cmFuc2FjdGlvbl9pZDogdHJhbnNhY3Rpb25JZCwKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGxpc3RlbmVyX2dlbmVyYXRpb246IFN0cmluZyhsaXN0ZW5lckdlbmVy";
    encoded = encoded + "YXRpb24pCiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgfSBjYXRjaCAoc3VibWl0RmFpbHVyZSkgewogICAgICAgICAgICAgICAgICAgIC8vIHN1Ym1pdCBvd25zIHRoZSBmaXJzdCByb2xsYmFjayBhdHRlbXB0OyB0aGlzIGltbWVkaWF0ZQogICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgIC8vIGNhbGxlciByZXBlYXRzIHRoZSBzZXR0bGVtZW50IGlkZW1wb3RlbnRseSBzbyBubyB0aHJvd24KICAgICAgICAgICAgICAgICAgICAvLyBwYXRoIGNhbiBvcnBoYW4gYSBwcmUtY29tbWFuZCBzY2llbnRpZmljIG11dGF0aW9uLgogICAgICAgICAgICAgICAgICAgIHNldHRsZVJvbGxi";
    encoded = encoded + "YWNrT3duZXIocm9sbGJhY2tPd25lciwgIkRFRkVSUkVEX1NVQk1JVF9GQUlMRUQiKTsKICAgICAgICAgICAgICAgICAgICBjbGVhclBlbmRpbmdSb2xsYmFjayhzdGF0ZSwgcm9sbGJhY2tPd25lcik7CiAgICAgICAgICAgICAgICAgICAgSUoubG9nKCJDVEwgUDEgZGVmZXJyZWQgc3VibWl0IGZhaWxlZDogIiArIHN1";
    encoded = encoded + "Ym1pdEZhaWx1cmUpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9CiAgICAgICAgfSkpOwogICAgICAgIHRpbWVyLnNldFJlcGVhdHMoZmFsc2UpOwogICAgICAgIHN0YXRlLnRpbWVycy5wdXNoKHRpbWVyKTsKCiAgICAgICAgbW91c2VMaXN0ZW5lciA9IGFkYXB0ZXIoTW91c2VBZGFwdGVyLCB7CiAgICAg";
    encoded = encoded + "ICAgICAgIG1vdXNlUHJlc3NlZDogZnVuY3Rpb24gKGV2ZW50KSB7CiAgICAgICAgICAgICAgICB2YXIgcm9pID0gbnVsbDsKICAgICAgICAgICAgICAgIHZhciBtYW5hZ2VyOwogICAgICAgICAgICAgICAgdmFyIGJsb2NrZWQ7CiAgICAgICAgICAgICAgICB2YXIgbWFzdGVyU3RhdHVzOwogICAgICAgICAgICAgICAg";
    encoded = encoded + "dmFyIHJvbGxiYWNrT3duZXI7CiAgICAgICAgICAgICAgICB2YXIgb3duZXJTbmFwc2hvdDsKICAgICAgICAgICAgICAgIHZhciBvd25lck5ldyA9IGZhbHNlOwogICAgICAgICAgICAgICAgdmFyIHRhcmdldDsKICAgICAgICAgICAgICAgIHZhciBpbnRlcm5hbFN1YmNvZGU7CiAgICAgICAgICAgICAgICB0cnkgewog";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgIGlmICghdGVsZW1ldHJ5TGlzdGVuZXJDYWxsYmFjaygKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGltcCwgc3RhdGUsIGxpc3RlbmVyR2VuZXJhdGlvbiwgIkVESVRfUk9JIiwgIk1PVVNFX1BSRVNTRUQiKSkgewogICAgICAgICAgICAgICAgICAgICAgICBpZiAoZXZlbnQgIT0g";
    encoded = encoded + "bnVsbCkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgZXZlbnQuY29uc3VtZSgpOwogICAgICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgICAgIHByZXNzID0gbnVsbDsKICAgICAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAg";
    encoded = encoded + "ICAgICAgIH0gY2F0Y2ggKHByZXNzVGVsZW1ldHJ5RXJyb3IpIHsKICAgICAgICAgICAgICAgICAgICBpZiAoZXZlbnQgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgICAgICBldmVudC5jb25zdW1lKCk7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIHByZXNzID0gbnVsbDsKICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBpZiAoaW1hZ2VQcm9wZXJ0eSgKICAgICAgICAgICAgICAgICAgICAgICAgaW1wLCAiQ2F2aXR5TGlnaHRJbnRlcmFjdGlvbk1vZGUiLCAiTk9UX1ZFUklGSUVEIgogICAgICAgICAgICAgICAgICAgICkgPT09ICJh";
    encoded = encoded + "ZGQiKSB7CiAgICAgICAgICAgICAgICAgICAgcHJlc3MgPSBudWxsOwogICAgICAgICAgICAgICAgICAgIHJldHVybjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgdGFyZ2V0ID0gcmVzb2x2ZUludGVyYWN0aXZlQ2F2aXR5VGFyZ2V0KGltcCk7CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICB9IGNhdGNoICh0YXJnZXRFcnJvcikgewogICAgICAgICAgICAgICAgICAgIGludGVybmFsU3ViY29kZSA9IGRpYWdub3N0aWNTdWJjb2RlKAogICAgICAgICAgICAgICAgICAgICAgICB0YXJnZXRFcnJvciwgIklOVEVSQUNUSVZFX1RBUkdFVF9SRVNPTFVUSU9OX0ZBSUxFRCIKICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICApOwogICAgICAgICAgICAgICAgICAgIHF1YXJhbnRpbmVSb2xsYmFjaygKICAgICAgICAgICAgICAgICAgICAgICAge2ltcDogaW1wLCBleHBlY3RlZF9zbmFwc2hvdDogbnVsbH0sCiAgICAgICAgICAgICAgICAgICAgICAgICJNT1VTRV9QUkVTU19ST0xMQkFDS19UQVJHRVRfRkFJTEVEIiwgaW50ZXJu";
    encoded = encoded + "YWxTdWJjb2RlCiAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgICAgICBpZiAoZXZlbnQgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgICAgICBldmVudC5jb25zdW1lKCk7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIHByZXNzID0gbnVsbDsKICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBpZiAodGFyZ2V0LnN0YXR1cyA9PT0gIk5PX0VESVRfVEFSR0VUIikgewogICAgICAgICAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnQiLCAiTk9fRURJVF9UQVJHRVQiKTsKICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50X2RldGFpbCIsICJJTlRFUkFDVElWRV9OT19FRElUX1RBUkdFVCIpOwogICAgICAgICAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnRfbXV0YXRpb25zIiwgIjAiKTsKICAgICAgICAgICAgICAgICAgICBp";
    encoded = encoded + "bXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50X3JvaV9tYW5hZ2VyX2NoYW5nZXMiLCAiMCIpOwogICAgICAgICAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnRfZGlza193cml0ZXMiLCAiTk9ORSIpOwogICAgICAgICAgICAgICAgICAgIGlmICh0YXJnZXQuY29uc3VtZV9l";
    encoded = encoded + "dmVudCAmJiBldmVudCAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIGV2ZW50LmNvbnN1bWUoKTsKICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgcHJlc3MgPSBudWxsOwogICAgICAgICAgICAgICAgICAgIHJldHVybjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAg";
    encoded = encoded + "ICAgIHJvaSA9IHRhcmdldC5yb2k7CiAgICAgICAgICAgICAgICBibG9ja2VkID0gIXNjaWVudGlmaWNXcml0ZUFsbG93ZWQoaW1wKTsKICAgICAgICAgICAgICAgIG1hbmFnZXIgPSB0YXJnZXQubWFuYWdlcjsKICAgICAgICAgICAgICAgIHRyeSB7CiAgICAgICAgICAgICAgICAgICAgcm9sbGJhY2tPd25lciA9IHNu";
    encoded = encoded + "YXBzaG90UGVuZGluZ1JvbGxiYWNrKHN0YXRlKS5vd25lcjsKICAgICAgICAgICAgICAgICAgICBpZiAocm9sbGJhY2tPd25lciAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIGlmIChyb2xsYmFja093bmVyLnV1aWQgIT09IHJvaVV1aWQocm9pKSB8fAogICAgICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICFyb2xsYmFja093bmVyQ29udGV4dE1hdGNoZXMocm9sbGJhY2tPd25lcikpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUEVORElOR19ST0xMQkFDS19PV05FUl9JTlRFUlZFTkVEIik7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB9";
    encoded = encoded + "IGVsc2UgewogICAgICAgICAgICAgICAgICAgICAgICBvd25lclNuYXBzaG90ID0gY2FwdHVyZShpbXAsICJJTlRFUkFDVElWRV9FRElUIiwgdHJ1ZSk7CiAgICAgICAgICAgICAgICAgICAgICAgIHJvbGxiYWNrT3duZXIgPSBjcmVhdGVSb2xsYmFja093bmVyKAogICAgICAgICAgICAgICAgICAgICAgICAgICAgaW1w";
    encoded = encoded + "LCB0YXJnZXQudXVpZCwgcm9pLmNsb25lKCksIHRhcmdldC5pbmRleCwgb3duZXJTbmFwc2hvdAogICAgICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgICAgICBvd25lck5ldyA9IHRydWU7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgfSBjYXRjaCAob3duZXJFcnJv";
    encoded = encoded + "cikgewogICAgICAgICAgICAgICAgICAgIGJsb2NrZWQgPSB0cnVlOwogICAgICAgICAgICAgICAgICAgIGludGVybmFsU3ViY29kZSA9IGRpYWdub3N0aWNTdWJjb2RlKAogICAgICAgICAgICAgICAgICAgICAgICBvd25lckVycm9yLCAiUk9MTEJBQ0tfQkFTRUxJTkVfRkFJTFVSRV9VTkNMQVNTSUZJRUQiCiAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgICAgICBxdWFyYW50aW5lUm9sbGJhY2soCiAgICAgICAgICAgICAgICAgICAgICAgIHtpbXA6IGltcCwgZXhwZWN0ZWRfc25hcHNob3Q6IG93bmVyU25hcHNob3QgfHwgbnVsbH0sCiAgICAgICAgICAgICAgICAgICAgICAgICJNT1VTRV9QUkVTU19ST0xMQkFD";
    encoded = encoded + "S19CQVNFTElORV9GQUlMRUQiLCBpbnRlcm5hbFN1YmNvZGUKICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgcHJlc3MgPSB7CiAgICAgICAgICAgICAgICAgICAgdXVpZDogdGFyZ2V0LnV1aWQsCiAgICAgICAgICAgICAgICAgICAgY2F2aXR5X2lkOiB0YXJnZXQu";
    encoded = encoded + "Y2F2aXR5X2lkLAogICAgICAgICAgICAgICAgICAgIHN0YXRlX3NoYTI1Njogcm9pU3RhdGVTaGEyNTYocm9pKSwKICAgICAgICAgICAgICAgICAgICBnZW5lcmF0aW9uOiBpbWFnZVByb3BlcnR5KGltcCwgIkNUTC5QMS5nZW5lcmF0aW9uX3Rva2VuIiwgIjAiKSwKICAgICAgICAgICAgICAgICAgICBpbmRleDogdGFy";
    encoded = encoded + "Z2V0LmluZGV4LAogICAgICAgICAgICAgICAgICAgIGJsb2NrZWQ6IGJsb2NrZWQsCiAgICAgICAgICAgICAgICAgICAgcm9sbGJhY2tPd25lcjogcm9sbGJhY2tPd25lciB8fCBudWxsLAogICAgICAgICAgICAgICAgICAgIG93bmVyTmV3OiBvd25lck5ldwogICAgICAgICAgICAgICAgfTsKICAgICAgICAgICAgICAg";
    encoded = encoded + "IGlmIChibG9ja2VkKSB7CiAgICAgICAgICAgICAgICAgICAgaWYgKGV2ZW50ICE9IG51bGwpIHsKICAgICAgICAgICAgICAgICAgICAgICAgZXZlbnQuY29uc3VtZSgpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICBtYXN0ZXJTdGF0dXMgPSBzY2llbnRpZmljV3JpdGVTdGF0dXMoaW1w";
    encoded = encoded + "KTsKICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlCbG9ja2VkKGltcCwgIkVESVRfUk9JIiwgbWFzdGVyU3RhdHVzKTsKICAgICAgICAgICAgICAgICAgICBJSi5zaG93U3RhdHVzKCJDVEwgUDE6IG1hc3Rlci9zb3VyY2UgIiArIG1hc3RlclN0YXR1cyArCiAgICAgICAgICAgICAgICAgICAgICAgICI7IHNjaWVu";
    encoded = encoded + "dGlmaWMgZWRpdCBibG9ja2VkLiIpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9LAogICAgICAgICAgICBtb3VzZVJlbGVhc2VkOiBmdW5jdGlvbiAoZXZlbnQpIHsKICAgICAgICAgICAgICAgIHZhciByb2k7CiAgICAgICAgICAgICAgICB2YXIgbWFuYWdlcjsKICAgICAgICAgICAgICAgIHZhciBtYW5h";
    encoded = encoded + "Z2VyUm9pOwogICAgICAgICAgICAgICAgdmFyIG5leHQ7CiAgICAgICAgICAgICAgICB2YXIgYWN0aXZlU3RhdGU7CiAgICAgICAgICAgICAgICB2YXIgY2hhbmdlZDsKICAgICAgICAgICAgICAgIHZhciBzbmFwc2hvdDsKICAgICAgICAgICAgICAgIHZhciByZXF1ZXN0SWQ7CiAgICAgICAgICAgICAgICB2YXIgdHJh";
    encoded = encoded + "bnNhY3Rpb25JZDsKICAgICAgICAgICAgICAgIHZhciBvbGRQcmVzcyA9IHByZXNzOwogICAgICAgICAgICAgICAgcHJlc3MgPSBudWxsOwogICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICBpZiAoIXRlbGVtZXRyeUxpc3RlbmVyQ2FsbGJhY2soCiAgICAgICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICBpbXAsIHN0YXRlLCBsaXN0ZW5lckdlbmVyYXRpb24sICJFRElUX1JPSSIsICJNT1VTRV9SRUxFQVNFRCIpKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIGlmIChvbGRQcmVzcyAhPSBudWxsICYmIG9sZFByZXNzLnJvbGxiYWNrT3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgICAgICAgICAgc2V0";
    encoded = encoded + "dGxlUm9sbGJhY2tPd25lcigKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICBvbGRQcmVzcy5yb2xsYmFja093bmVyLCAiTU9VU0VfUkVMRUFTRV9DQUxMQkFDS19SRUpFQ1RFRCIKICAgICAgICAgICAgICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBjbGVhclBlbmRpbmdS";
    encoded = encoded + "b2xsYmFjayhzdGF0ZSwgb2xkUHJlc3Mucm9sbGJhY2tPd25lcik7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIH0gY2F0Y2ggKHJlbGVhc2VUZWxlbWV0cnlFcnJvcikgewogICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgIGlmIChvbGRQcmVzcyAhPSBudWxsICYmIG9sZFByZXNzLnJvbGxiYWNrT3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKAogICAgICAgICAgICAgICAgICAgICAgICAgICAgb2xkUHJlc3Mucm9sbGJhY2tPd25lciwgIk1PVVNFX1JFTEVBU0Vf";
    encoded = encoded + "Q0FMTEJBQ0tfVEVMRU1FVFJZX0ZBSUxFRCIKICAgICAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgICAgICAgICAgY2xlYXJQZW5kaW5nUm9sbGJhY2soc3RhdGUsIG9sZFByZXNzLnJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICByZXR1cm47";
    encoded = encoded + "CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBpZiAob2xkUHJlc3MgPT0gbnVsbCB8fCBzdGF0ZS5jbG9zZWQgfHwKICAgICAgICAgICAgICAgICAgICAgICAgb2xkUHJlc3MuZ2VuZXJhdGlvbiAhPT0gaW1hZ2VQcm9wZXJ0eShpbXAsICJDVEwuUDEuZ2VuZXJhdGlvbl90b2tlbiIsICIwIikpIHsKICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICBpZiAob2xkUHJlc3MgIT0gbnVsbCAmJiBvbGRQcmVzcy5yb2xsYmFja093bmVyICE9IG51bGwpIHsKICAgICAgICAgICAgICAgICAgICAgICAgc2V0dGxlUm9sbGJhY2tPd25lcihvbGRQcmVzcy5yb2xsYmFja093bmVyLCAiTU9VU0VfUkVMRUFTRV9HRU5FUkFUSU9OX0NIQU5HRUQiKTsK";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgICAgY2xlYXJQZW5kaW5nUm9sbGJhY2soc3RhdGUsIG9sZFByZXNzLnJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBpZiAob2xkUHJlc3MuYmxvY2tl";
    encoded = encoded + "ZCkgewogICAgICAgICAgICAgICAgICAgIGlmIChldmVudCAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgICAgIGV2ZW50LmNvbnN1bWUoKTsKICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgaWYgKG9sZFByZXNzLnJvbGxiYWNrT3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKG9sZFByZXNzLnJvbGxiYWNrT3duZXIsICJCTE9DS0VEX01PVVNFX0VESVQiKTsKICAgICAgICAgICAgICAgICAgICAgICAgY2xlYXJQZW5kaW5nUm9sbGJhY2soc3RhdGUsIG9sZFByZXNzLnJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgIH0KICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBtYW5hZ2VyID0gUm9pTWFuYWdlci5nZXRJbnN0YW5jZTIoKTsKICAgICAgICAgICAgICAgIHJvaSA9IGltcC5nZXRSb2koKTsKICAgICAgICAgICAgICAgIGlmIChtYW5hZ2VyID09IG51bGwgfHwgcm9pID09IG51";
    encoded = encoded + "bGwgfHwKICAgICAgICAgICAgICAgICAgICAgICAgcm9pVXVpZChyb2kpICE9PSBvbGRQcmVzcy51dWlkIHx8CiAgICAgICAgICAgICAgICAgICAgICAgIHJvaUNhdml0eUlkKHJvaSkgIT09IG9sZFByZXNzLmNhdml0eV9pZCB8fAogICAgICAgICAgICAgICAgICAgICAgICBtYW5hZ2VyLmdldFNlbGVjdGVkSW5kZXgo";
    encoded = encoded + "KSAhPT0gb2xkUHJlc3MuaW5kZXggfHwKICAgICAgICAgICAgICAgICAgICAgICAgdW5pcXVlUm9pSW5kZXgobWFuYWdlciwgb2xkUHJlc3MudXVpZCkgIT09IG9sZFByZXNzLmluZGV4KSB7CiAgICAgICAgICAgICAgICAgICAgc2V0dGxlUm9sbGJhY2tPd25lcihvbGRQcmVzcy5yb2xsYmFja093bmVyLCAiTU9VU0Vf";
    encoded = encoded + "U0VMRUNUSU9OX0lOVEVSVkVORUQiKTsKICAgICAgICAgICAgICAgICAgICBjbGVhclBlbmRpbmdSb2xsYmFjayhzdGF0ZSwgb2xkUHJlc3Mucm9sbGJhY2tPd25lcik7CiAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgbWFuYWdlclJvaSA9IG1hbmFnZXIu";
    encoded = encoded + "Z2V0Um9pKG9sZFByZXNzLmluZGV4KTsKICAgICAgICAgICAgICAgIGlmIChyb2lDYXZpdHlJZChtYW5hZ2VyUm9pKSAhPT0gb2xkUHJlc3MuY2F2aXR5X2lkIHx8CiAgICAgICAgICAgICAgICAgICAgICAgIHJvaVN0YXRlU2hhMjU2KG1hbmFnZXJSb2kpICE9PSBvbGRQcmVzcy5zdGF0ZV9zaGEyNTYpIHsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKG9sZFByZXNzLnJvbGxiYWNrT3duZXIsICJNT1VTRV9NQU5BR0VSX0JBU0VMSU5FX0lOVEVSVkVORUQiKTsKICAgICAgICAgICAgICAgICAgICBjbGVhclBlbmRpbmdSb2xsYmFjayhzdGF0ZSwgb2xkUHJlc3Mucm9sbGJhY2tPd25lcik7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgYWN0aXZlU3RhdGUgPSByb2lTdGF0ZVNoYTI1Nihyb2kpOwogICAgICAgICAgICAgICAgY2hhbmdlZCA9IGFjdGl2ZVN0YXRlICE9PSBvbGRQcmVzcy5zdGF0ZV9zaGEyNTY7CiAgICAgICAgICAgICAgICBpZiAoIWNoYW5nZWQp";
    encoded = encoded + "IHsKICAgICAgICAgICAgICAgICAgICBpZiAob2xkUHJlc3Mub3duZXJOZXcgJiYgYmVnaW5Sb2xsYmFja0NvbW1pdChvbGRQcmVzcy5yb2xsYmFja093bmVyKSkgewogICAgICAgICAgICAgICAgICAgICAgICBmaW5pc2hSb2xsYmFja0NvbW1pdChvbGRQcmVzcy5yb2xsYmFja093bmVyKTsKICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICB9CiAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICBuZXh0ID0gcm9pLmNsb25lKCk7CiAgICAgICAgICAgICAgICAgICAgbWFuYWdlci5zZXRSb2kobmV4dCwgb2xkUHJlc3MuaW5kZXgpOwogICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgIG1hbmFnZXIuc2VsZWN0KGltcCwgb2xkUHJlc3MuaW5kZXgpOwogICAgICAgICAgICAgICAgICAgIGltcC5zZXRSb2kobmV4dCk7CiAgICAgICAgICAgICAgICAgICAgaW1wLnVwZGF0ZUFuZERyYXcoKTsKICAgICAgICAgICAgICAgICAgICBidW1wQ291bnRlcihpbXAsICJDVEwuUDEuc2VsZWN0";
    encoded = encoded + "aW9uX3JldmlzaW9uIik7CiAgICAgICAgICAgICAgICAgICAgc25hcHNob3QgPSBjYXB0dXJlKGltcCwgIklOVEVSQUNUSVZFX0VESVQiLCB0cnVlKTsKICAgICAgICAgICAgICAgICAgICBpZiAoIXVwZGF0ZVJvbGxiYWNrT3duZXIob2xkUHJlc3Mucm9sbGJhY2tPd25lciwgc25hcHNob3QpKSB7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiTU9VU0VfUk9MTEJBQ0tfT1dORVJfVVBEQVRFX0ZBSUxFRCIpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIH0gY2F0Y2ggKHJlbGVhc2VNdXRhdGlvbkVycm9yKSB7CiAgICAgICAgICAgICAgICAgICAgb2xkUHJlc3Mucm9sbGJhY2tPd25l";
    encoded = encoded + "ci5yb2xsYmFja19pbnRlcm5hbF9zdWJjb2RlID0gZGlhZ25vc3RpY1N1YmNvZGUoCiAgICAgICAgICAgICAgICAgICAgICAgIHJlbGVhc2VNdXRhdGlvbkVycm9yLCAiUk9MTEJBQ0tfRkFJTFVSRV9VTkNMQVNTSUZJRUQiCiAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgICAgICBhZG9wdE93bmVk";
    encoded = encoded + "Um9sbGJhY2tDb250ZXh0KG9sZFByZXNzLnJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgIHNldHRsZVJvbGxiYWNrT3duZXIob2xkUHJlc3Mucm9sbGJhY2tPd25lciwgIk1PVVNFX09XTkVSX1VQREFURV9GQUlMRUQiKTsKICAgICAgICAgICAgICAgICAgICBjbGVhclBlbmRpbmdSb2xsYmFjayhzdGF0";
    encoded = encoded + "ZSwgb2xkUHJlc3Mucm9sbGJhY2tPd25lcik7CiAgICAgICAgICAgICAgICAgICAgSUoubG9nKCJDVEwgUDEgbW91c2UgZWRpdCBmYWlsZWQ6ICIgKyBkaWFnbm9zdGljU3ViY29kZSgKICAgICAgICAgICAgICAgICAgICAgICAgcmVsZWFzZU11dGF0aW9uRXJyb3IsICJST0xMQkFDS19GQUlMVVJFX1VOQ0xBU1NJRklF";
    encoded = encoded + "RCIKICAgICAgICAgICAgICAgICAgICApKTsKICAgICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgIHJlcXVlc3RJZCA9IHRlbGVtZXRyeUlkKCk7CiAgICAgICAgICAgICAgICAgICAgdHJhbnNhY3Rpb25JZCA9IHRl";
    encoded = encoded + "bGVtZXRyeUlkKCk7CiAgICAgICAgICAgICAgICAgICAgc2V0UGVuZGluZ1JvbGxiYWNrKAogICAgICAgICAgICAgICAgICAgICAgICBzdGF0ZSwgb2xkUHJlc3Mucm9sbGJhY2tPd25lciwgc25hcHNob3QsIHJlcXVlc3RJZCwKICAgICAgICAgICAgICAgICAgICAgICAgdHJhbnNhY3Rpb25JZCwgIklOVEVSQUNUSVZF";
    encoded = encoded + "X0VESVRfVElNRVIiCiAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgICAgICB0ZWxlbWV0cnlSZWNvcmQoewogICAgICAgICAgICAgICAgICAgICAgICBldmVudF90eXBlOiAiREVGRVJSRURfU0NIRURVTEVEIiwgaW1wOiBpbXAsCiAgICAgICAgICAgICAgICAgICAgICAgIG93bmVyX2NvbnRleHQ6";
    encoded = encoded + "IHNuYXBzaG90LCBvcGVyYXRpb246ICJFRElUX1JPSSIsIHBoYXNlOiAiU0NIRURVTEVEIiwKICAgICAgICAgICAgICAgICAgICAgICAgcmVxdWVzdF9pZDogcmVxdWVzdElkLCB0cmFuc2FjdGlvbl9pZDogdHJhbnNhY3Rpb25JZCwKICAgICAgICAgICAgICAgICAgICAgICAgc3RhdHVzOiAiQUNDRVBURUQiLCBsaXN0";
    encoded = encoded + "ZW5lcl9nZW5lcmF0aW9uOiBTdHJpbmcobGlzdGVuZXJHZW5lcmF0aW9uKSwKICAgICAgICAgICAgICAgICAgICAgICAgY2FsbGJhY2tfZGVjaXNpb246ICJOT1RfQVBQTElDQUJMRSIsIGRldGFpbF9jb2RlOiAiSU5URVJBQ1RJVkVfRURJVF9USU1FUiIKICAgICAgICAgICAgICAgICAgICB9KTsKICAgICAgICAgICAg";
    encoded = encoded + "ICAgIH0gY2F0Y2ggKHNjaGVkdWxlVGVsZW1ldHJ5RXJyb3IpIHsKICAgICAgICAgICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKAogICAgICAgICAgICAgICAgICAgICAgICBvbGRQcmVzcy5yb2xsYmFja093bmVyLCAiTU9VU0VfU0NIRURVTEVfVEVMRU1FVFJZX0ZBSUxFRCIKICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICApOwogICAgICAgICAgICAgICAgICAgIGNsZWFyUGVuZGluZ1JvbGxiYWNrKHN0YXRlLCBvbGRQcmVzcy5yb2xsYmFja093bmVyKTsKICAgICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICB0aW1lci5yZXN0YXJ0KCk7CiAgICAgICAgICAgIH0KICAgICAgICB9";
    encoded = encoded + "KTsKCiAgICAgICAgd2hlZWxMaXN0ZW5lciA9IGFkYXB0ZXIoTW91c2VXaGVlbExpc3RlbmVyLCB7CiAgICAgICAgICAgIG1vdXNlV2hlZWxNb3ZlZDogZnVuY3Rpb24gKGV2ZW50KSB7CiAgICAgICAgICAgICAgICB2YXIgcm9pOwogICAgICAgICAgICAgICAgdmFyIG1hbmFnZXI7CiAgICAgICAgICAgICAgICB2YXIg";
    encoded = encoded + "aW5kZXg7CiAgICAgICAgICAgICAgICB2YXIgdGFyZ2V0OwogICAgICAgICAgICAgICAgdmFyIGludGVybmFsU3ViY29kZTsKICAgICAgICAgICAgICAgIHZhciBiZWZvcmU7CiAgICAgICAgICAgICAgICB2YXIgYm91bmRzOwogICAgICAgICAgICAgICAgdmFyIHN4OwogICAgICAgICAgICAgICAgdmFyIHN5OwogICAg";
    encoded = encoded + "ICAgICAgICAgICAgdmFyIG9sZERpYW1ldGVyOwogICAgICAgICAgICAgICAgdmFyIHN0ZXA7CiAgICAgICAgICAgICAgICB2YXIgcm90YXRpb247CiAgICAgICAgICAgICAgICB2YXIgbmV4dERpYW1ldGVyOwogICAgICAgICAgICAgICAgdmFyIGZhY3RvcjsKICAgICAgICAgICAgICAgIHZhciBuZXh0OwogICAgICAg";
    encoded = encoded + "ICAgICAgICAgdmFyIHNuYXBzaG90OwogICAgICAgICAgICAgICAgdmFyIHV1aWQ7CiAgICAgICAgICAgICAgICB2YXIgcmVxdWVzdElkOwogICAgICAgICAgICAgICAgdmFyIHRyYW5zYWN0aW9uSWQ7CiAgICAgICAgICAgICAgICB2YXIgcm9sbGJhY2tPd25lcjsKICAgICAgICAgICAgICAgIHZhciBvd25lclNuYXBz";
    encoded = encoded + "aG90OwogICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICBpZiAoIXRlbGVtZXRyeUxpc3RlbmVyQ2FsbGJhY2soCiAgICAgICAgICAgICAgICAgICAgICAgICAgICBpbXAsIHN0YXRlLCBsaXN0ZW5lckdlbmVyYXRpb24sICJFRElUX1JPSSIsICJNT1VTRV9XSEVFTCIpKSB7CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgIGlmIChldmVudCAhPSBudWxsICYmIGV2ZW50LmlzQWx0RG93bigpKSB7CiAgICAgICAgICAgICAgICAgICAgICAgICAgICBldmVudC5jb25zdW1lKCk7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgICAgIH0K";
    encoded = encoded + "ICAgICAgICAgICAgICAgIH0gY2F0Y2ggKHdoZWVsVGVsZW1ldHJ5RXJyb3IpIHsKICAgICAgICAgICAgICAgICAgICBpZiAoZXZlbnQgIT0gbnVsbCAmJiBldmVudC5pc0FsdERvd24oKSkgewogICAgICAgICAgICAgICAgICAgICAgICBldmVudC5jb25zdW1lKCk7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgIHJldHVybjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGlmICghZXZlbnQuaXNBbHREb3duKCkpIHsKICAgICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICB0cnkgewogICAgICAgICAgICAgICAgICAgIHRhcmdldCA9IHJl";
    encoded = encoded + "c29sdmVJbnRlcmFjdGl2ZUNhdml0eVRhcmdldChpbXApOwogICAgICAgICAgICAgICAgfSBjYXRjaCAod2hlZWxUYXJnZXRFcnJvcikgewogICAgICAgICAgICAgICAgICAgIGludGVybmFsU3ViY29kZSA9IGRpYWdub3N0aWNTdWJjb2RlKAogICAgICAgICAgICAgICAgICAgICAgICB3aGVlbFRhcmdldEVycm9yLCAi";
    encoded = encoded + "SU5URVJBQ1RJVkVfVEFSR0VUX1JFU09MVVRJT05fRkFJTEVEIgogICAgICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgICAgICAgICAgcXVhcmFudGluZVJvbGxiYWNrKAogICAgICAgICAgICAgICAgICAgICAgICB7aW1wOiBpbXAsIGV4cGVjdGVkX3NuYXBzaG90OiBudWxsfSwKICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgIldIRUVMX1JPTExCQUNLX1RBUkdFVF9GQUlMRUQiLCBpbnRlcm5hbFN1YmNvZGUKICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgIGV2ZW50LmNvbnN1bWUoKTsKICAgICAgICAgICAgICAgICAgICByZXR1cm47CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBpZiAo";
    encoded = encoded + "dGFyZ2V0LnN0YXR1cyA9PT0gIk5PX0VESVRfVEFSR0VUIikgewogICAgICAgICAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnQiLCAiTk9fRURJVF9UQVJHRVQiKTsKICAgICAgICAgICAgICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50X2RldGFpbCIsICJJ";
    encoded = encoded + "TlRFUkFDVElWRV9OT19FRElUX1RBUkdFVCIpOwogICAgICAgICAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnRfbXV0YXRpb25zIiwgIjAiKTsKICAgICAgICAgICAgICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5sYXN0X2V2ZW50X3JvaV9tYW5hZ2VyX2NoYW5nZXMiLCAi";
    encoded = encoded + "MCIpOwogICAgICAgICAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLmxhc3RfZXZlbnRfZGlza193cml0ZXMiLCAiTk9ORSIpOwogICAgICAgICAgICAgICAgICAgIGlmICh0YXJnZXQuY29uc3VtZV9ldmVudCkgewogICAgICAgICAgICAgICAgICAgICAgICBldmVudC5jb25zdW1lKCk7CiAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIHJldHVybjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGV2ZW50LmNvbnN1bWUoKTsKICAgICAgICAgICAgICAgIGlmICghc2NpZW50aWZpY1dyaXRlQWxsb3dlZChpbXApKSB7CiAgICAgICAgICAgICAgICAgICAgdmFyIG1hc3RlclN0YXR1";
    encoded = encoded + "cyA9IHNjaWVudGlmaWNXcml0ZVN0YXR1cyhpbXApOwogICAgICAgICAgICAgICAgICAgIHRlbGVtZXRyeUJsb2NrZWQoaW1wLCAiRURJVF9ST0kiLCBtYXN0ZXJTdGF0dXMpOwogICAgICAgICAgICAgICAgICAgIElKLnNob3dTdGF0dXMoIkNUTCBQMTogbWFzdGVyL3NvdXJjZSAiICsgbWFzdGVyU3RhdHVzICsKICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICAgICAgIjsgc2NpZW50aWZpYyBlZGl0IGJsb2NrZWQuIik7CiAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgbWFuYWdlciA9IHRhcmdldC5tYW5hZ2VyOwogICAgICAgICAgICAgICAgcm9pID0gdGFyZ2V0LnJvaTsKICAgICAg";
    encoded = encoded + "ICAgICAgICAgIGluZGV4ID0gdGFyZ2V0LmluZGV4OwogICAgICAgICAgICAgICAgYmVmb3JlID0gcm9pLmNsb25lKCk7CiAgICAgICAgICAgICAgICB1dWlkID0gcm9pVXVpZChyb2kpOwogICAgICAgICAgICAgICAgYm91bmRzID0gcm9pLmdldEZsb2F0Qm91bmRzKCk7CiAgICAgICAgICAgICAgICBzeCA9IHBhcnNl";
    encoded = encoded + "RmxvYXQoaW1hZ2VQcm9wZXJ0eShpbXAsICJDVEwuUDEuc2NhbGVfeF9ubV9weCIsICJOYU4iKSk7CiAgICAgICAgICAgICAgICBzeSA9IHBhcnNlRmxvYXQoaW1hZ2VQcm9wZXJ0eShpbXAsICJDVEwuUDEuc2NhbGVfeV9ubV9weCIsICJOYU4iKSk7CiAgICAgICAgICAgICAgICBzdGVwID0gcGFyc2VGbG9hdChpbWFn";
    encoded = encoded + "ZVByb3BlcnR5KGltcCwgIkNUTC5QMS5yZXNpemVfc3RlcF9ubSIsICIwLjAxMCIpKTsKICAgICAgICAgICAgICAgIHJvdGF0aW9uID0gZXZlbnQuZ2V0UHJlY2lzZVdoZWVsUm90YXRpb24oKTsKICAgICAgICAgICAgICAgIGlmICghaXNGaW5pdGUocm90YXRpb24pIHx8IHJvdGF0aW9uID09PSAwKSB7CiAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgcm90YXRpb24gPSBldmVudC5nZXRXaGVlbFJvdGF0aW9uKCk7CiAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICBvbGREaWFtZXRlciA9IE1hdGguc3FydCgoYm91bmRzLndpZHRoICogc3gpICogKGJvdW5kcy5oZWlnaHQgKiBzeSkpOwogICAgICAgICAgICAgICAgaWYgKCEoc3ggPiAw";
    encoded = encoded + "ICYmIHN5ID4gMCAmJiBzdGVwID4gMCAmJiBvbGREaWFtZXRlciA+IDAgJiYgaXNGaW5pdGUocm90YXRpb24pKSkgewogICAgICAgICAgICAgICAgICAgIHJldHVybjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIG5leHREaWFtZXRlciA9IE1hdGgubWF4KE1hdGgubWF4KHN4LCBzeSksIG9sZERpYW1l";
    encoded = encoded + "dGVyIC0gcm90YXRpb24gKiBzdGVwKTsKICAgICAgICAgICAgICAgIGZhY3RvciA9IG5leHREaWFtZXRlciAvIG9sZERpYW1ldGVyOwogICAgICAgICAgICAgICAgbmV4dCA9IG5ldyBPdmFsUm9pKAogICAgICAgICAgICAgICAgICAgIGJvdW5kcy54ICsgYm91bmRzLndpZHRoICogKDEgLSBmYWN0b3IpIC8gMiwKICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgICBib3VuZHMueSArIGJvdW5kcy5oZWlnaHQgKiAoMSAtIGZhY3RvcikgLyAyLAogICAgICAgICAgICAgICAgICAgIGJvdW5kcy53aWR0aCAqIGZhY3RvciwKICAgICAgICAgICAgICAgICAgICBib3VuZHMuaGVpZ2h0ICogZmFjdG9yCiAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAg";
    encoded = encoded + "ICAgbmV4dC5jb3B5QXR0cmlidXRlcyhyb2kpOwogICAgICAgICAgICAgICAgaWYgKHJvaS5nZXRQcm9wZXJ0aWVzKCkgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgIG5leHQuc2V0UHJvcGVydGllcyhyb2kuZ2V0UHJvcGVydGllcygpKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIG5leHQu";
    encoded = encoded + "c2V0TmFtZShyb2kuZ2V0TmFtZSgpKTsKICAgICAgICAgICAgICAgIGlmIChoYXNJbkZsaWdodFJvbGxiYWNrT3duZXJzKHN0YXRlKSkgewogICAgICAgICAgICAgICAgICAgIHRlbGVtZXRyeUJsb2NrZWQoaW1wLCAiRURJVF9ST0kiLCAiTk9UX1ZFUklGSUVEIik7CiAgICAgICAgICAgICAgICAgICAgcmV0dXJuOwog";
    encoded = encoded + "ICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICByb2xsYmFja093bmVyID0gc25hcHNob3RQZW5kaW5nUm9sbGJhY2soc3RhdGUpLm93bmVyOwogICAgICAgICAgICAgICAgICAgIGlmIChyb2xsYmFja093bmVyICE9IG51bGwpIHsKICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgaWYgKHJvbGxiYWNrT3duZXIudXVpZCAhPT0gdXVpZCB8fAogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICFyb2xsYmFja093bmVyQ29udGV4dE1hdGNoZXMocm9sbGJhY2tPd25lcikpIHsKICAgICAgICAgICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUEVORElOR19ST0xMQkFD";
    encoded = encoded + "S19PV05FUl9JTlRFUlZFTkVEIik7CiAgICAgICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgICAgICB9IGVsc2UgewogICAgICAgICAgICAgICAgICAgICAgICBvd25lclNuYXBzaG90ID0gY2FwdHVyZShpbXAsICJJTlRFUkFDVElWRV9SRVNJWkUiLCB0cnVlKTsKICAgICAgICAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgcm9sbGJhY2tPd25lciA9IGNyZWF0ZVJvbGxiYWNrT3duZXIoCiAgICAgICAgICAgICAgICAgICAgICAgICAgICBpbXAsIHV1aWQsIGJlZm9yZSwgaW5kZXgsIG93bmVyU25hcHNob3QKICAgICAgICAgICAgICAgICAgICAgICAgKTsKICAgICAgICAgICAgICAgICAgICB9CiAgICAgICAgICAgICAgICAgICAgbWFu";
    encoded = encoded + "YWdlci5zZXRSb2kobmV4dCwgaW5kZXgpOwogICAgICAgICAgICAgICAgICAgIG1hbmFnZXIuc2VsZWN0KGltcCwgaW5kZXgpOwogICAgICAgICAgICAgICAgICAgIGltcC5zZXRSb2kobmV4dCk7CiAgICAgICAgICAgICAgICAgICAgaW1wLnVwZGF0ZUFuZERyYXcoKTsKICAgICAgICAgICAgICAgICAgICBidW1wQ291";
    encoded = encoded + "bnRlcihpbXAsICJDVEwuUDEuc2VsZWN0aW9uX3JldmlzaW9uIik7CiAgICAgICAgICAgICAgICAgICAgc25hcHNob3QgPSBjYXB0dXJlKGltcCwgIklOVEVSQUNUSVZFX1JFU0laRSIsIHRydWUpOwogICAgICAgICAgICAgICAgICAgIGlmICghdXBkYXRlUm9sbGJhY2tPd25lcihyb2xsYmFja093bmVyLCBzbmFwc2hv";
    encoded = encoded + "dCkpIHsKICAgICAgICAgICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJXSEVFTF9ST0xMQkFDS19PV05FUl9VUERBVEVfRkFJTEVEIik7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIHJlcXVlc3RJZCA9IHRlbGVtZXRyeUlkKCk7CiAgICAgICAgICAgICAgICAgICAgdHJhbnNh";
    encoded = encoded + "Y3Rpb25JZCA9IHRlbGVtZXRyeUlkKCk7CiAgICAgICAgICAgICAgICAgICAgc2V0UGVuZGluZ1JvbGxiYWNrKAogICAgICAgICAgICAgICAgICAgICAgICBzdGF0ZSwgcm9sbGJhY2tPd25lciwgc25hcHNob3QsIHJlcXVlc3RJZCwKICAgICAgICAgICAgICAgICAgICAgICAgdHJhbnNhY3Rpb25JZCwgIklOVEVSQUNU";
    encoded = encoded + "SVZFX1JFU0laRV9USU1FUiIKICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgIHRlbGVtZXRyeVJlY29yZCh7CiAgICAgICAgICAgICAgICAgICAgICAgIGV2ZW50X3R5cGU6ICJERUZFUlJFRF9TQ0hFRFVMRUQiLCBpbXA6IGltcCwKICAgICAgICAgICAgICAgICAgICAgICAgb3duZXJfY29u";
    encoded = encoded + "dGV4dDogc25hcHNob3QsIG9wZXJhdGlvbjogIkVESVRfUk9JIiwgcGhhc2U6ICJTQ0hFRFVMRUQiLAogICAgICAgICAgICAgICAgICAgICAgICByZXF1ZXN0X2lkOiByZXF1ZXN0SWQsIHRyYW5zYWN0aW9uX2lkOiB0cmFuc2FjdGlvbklkLAogICAgICAgICAgICAgICAgICAgICAgICBzdGF0dXM6ICJBQ0NFUFRFRCIs";
    encoded = encoded + "IGxpc3RlbmVyX2dlbmVyYXRpb246IFN0cmluZyhsaXN0ZW5lckdlbmVyYXRpb24pLAogICAgICAgICAgICAgICAgICAgICAgICBjYWxsYmFja19kZWNpc2lvbjogIk5PVF9BUFBMSUNBQkxFIiwgZGV0YWlsX2NvZGU6ICJJTlRFUkFDVElWRV9SRVNJWkVfVElNRVIiCiAgICAgICAgICAgICAgICAgICAgfSk7CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgdGltZXIucmVzdGFydCgpOwogICAgICAgICAgICAgICAgfSBjYXRjaCAod2hlZWxNdXRhdGlvbkVycm9yKSB7CiAgICAgICAgICAgICAgICAgICAgaWYgKHJvbGxiYWNrT3duZXIgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgICAgICByb2xsYmFja093bmVyLnJvbGxiYWNrX2ludGVy";
    encoded = encoded + "bmFsX3N1YmNvZGUgPSBkaWFnbm9zdGljU3ViY29kZSgKICAgICAgICAgICAgICAgICAgICAgICAgICAgIHdoZWVsTXV0YXRpb25FcnJvciwgIlJPTExCQUNLX0ZBSUxVUkVfVU5DTEFTU0lGSUVEIgogICAgICAgICAgICAgICAgICAgICAgICApOwogICAgICAgICAgICAgICAgICAgICAgICBhZG9wdE93bmVkUm9sbGJh";
    encoded = encoded + "Y2tDb250ZXh0KHJvbGxiYWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgICAgICBzZXR0bGVSb2xsYmFja093bmVyKHJvbGxiYWNrT3duZXIsICJXSEVFTF9NVVRBVElPTl9PUl9TQ0hFRFVMRV9GQUlMRUQiKTsKICAgICAgICAgICAgICAgICAgICAgICAgY2xlYXJQZW5kaW5nUm9sbGJhY2soc3RhdGUsIHJvbGxi";
    encoded = encoded + "YWNrT3duZXIpOwogICAgICAgICAgICAgICAgICAgIH0gZWxzZSB7CiAgICAgICAgICAgICAgICAgICAgICAgIHF1YXJhbnRpbmVSb2xsYmFjaygKICAgICAgICAgICAgICAgICAgICAgICAgICAgIHtpbXA6IGltcCwgZXhwZWN0ZWRfc25hcHNob3Q6IG93bmVyU25hcHNob3QgfHwgbnVsbH0sCiAgICAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAiV0hFRUxfUk9MTEJBQ0tfQkFTRUxJTkVfRkFJTEVEIiwKICAgICAgICAgICAgICAgICAgICAgICAgICAgIGRpYWdub3N0aWNTdWJjb2RlKAogICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgIHdoZWVsTXV0YXRpb25FcnJvciwKICAgICAgICAgICAgICAgICAgICAgICAgICAgICAgICAi";
    encoded = encoded + "Uk9MTEJBQ0tfQkFTRUxJTkVfRkFJTFVSRV9VTkNMQVNTSUZJRUQiCiAgICAgICAgICAgICAgICAgICAgICAgICAgICApCiAgICAgICAgICAgICAgICAgICAgICAgICk7CiAgICAgICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgICAgIElKLmxvZygiQ1RMIFAxIHdoZWVsIGVkaXQgZmFpbGVkOiAiICsgZGlh";
    encoded = encoded + "Z25vc3RpY1N1YmNvZGUoCiAgICAgICAgICAgICAgICAgICAgICAgIHdoZWVsTXV0YXRpb25FcnJvciwgIlJPTExCQUNLX0ZBSUxVUkVfVU5DTEFTU0lGSUVEIgogICAgICAgICAgICAgICAgICAgICkpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9CiAgICAgICAgfSk7CgogICAgICAgIGtleUxpc3RlbmVy";
    encoded = encoded + "ID0gYWRhcHRlcihLZXlBZGFwdGVyLCB7CiAgICAgICAgICAgIGtleVByZXNzZWQ6IGZ1bmN0aW9uIChldmVudCkgewogICAgICAgICAgICAgICAgZGlzcGF0Y2hLZXlDb21tYW5kKGltcCwgc3RhdGUsIGxpc3RlbmVyR2VuZXJhdGlvbiwgZXZlbnQpOwogICAgICAgICAgICB9CiAgICAgICAgfSk7CgogICAgICAgIGNs";
    encoded = encoded + "b3NlTGlzdGVuZXIgPSBhZGFwdGVyKEltYWdlTGlzdGVuZXIsIHsKICAgICAgICAgICAgaW1hZ2VPcGVuZWQ6IGZ1bmN0aW9uICgpIHt9LAogICAgICAgICAgICBpbWFnZUNsb3NlZDogZnVuY3Rpb24gKGNsb3NlZEltcCkgewogICAgICAgICAgICAgICAgaWYgKGNsb3NlZEltcCAhPSBudWxsICYmIE51bWJlcihjbG9z";
    encoded = encoded + "ZWRJbXAuZ2V0SUQoKSkgPT09IE51bWJlcihpbXAuZ2V0SUQoKSkpIHsKICAgICAgICAgICAgICAgICAgICB0ZWFyZG93bihpbXApOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICB9LAogICAgICAgICAgICBpbWFnZVVwZGF0ZWQ6IGZ1bmN0aW9uICgpIHt9CiAgICAgICAgfSk7CgogICAgICAgIGNhbnZhcy5h";
    encoded = encoded + "ZGRNb3VzZUxpc3RlbmVyKG1vdXNlTGlzdGVuZXIpOwogICAgICAgIGNhbnZhcy5hZGRNb3VzZVdoZWVsTGlzdGVuZXIod2hlZWxMaXN0ZW5lcik7CiAgICAgICAgY2FudmFzLmFkZEtleUxpc3RlbmVyKGtleUxpc3RlbmVyKTsKICAgICAgICB3aW5kb3cuYWRkS2V5TGlzdGVuZXIoa2V5TGlzdGVuZXIpOwogICAgICAg";
    encoded = encoded + "IHN0YXRlLmxpc3RlbmVycy5wdXNoKHtraW5kOiAibW91c2UiLCBsaXN0ZW5lcjogbW91c2VMaXN0ZW5lcn0pOwogICAgICAgIHN0YXRlLmxpc3RlbmVycy5wdXNoKHtraW5kOiAid2hlZWwiLCBsaXN0ZW5lcjogd2hlZWxMaXN0ZW5lcn0pOwogICAgICAgIHN0YXRlLmxpc3RlbmVycy5wdXNoKHtraW5kOiAia2V5Iiwg";
    encoded = encoded + "bGlzdGVuZXI6IGtleUxpc3RlbmVyfSk7CiAgICAgICAgc3RhdGUuaW1hZ2VMaXN0ZW5lciA9IGNsb3NlTGlzdGVuZXI7CiAgICAgICAgSW1hZ2VQbHVzLmFkZEltYWdlTGlzdGVuZXIoY2xvc2VMaXN0ZW5lcik7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubGlzdGVuZXJzX3N0YXR1cyIsICJJTlNUQUxM";
    encoded = encoded + "RUQiKTsKICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5ydW50aW1lX3ZlcnNpb24iLCBWRVJTSU9OKTsKICAgICAgICB0ZWxlbWV0cnlSZWNvcmQoewogICAgICAgICAgICBldmVudF90eXBlOiAiTElTVEVORVJfSU5TVEFMTEVEIiwgaW1wOiBpbXAsCiAgICAgICAgICAgIG9wZXJhdGlvbjogIkxJU1RFTkVS";
    encoded = encoded + "X0xJRkVDWUNMRSIsIHBoYXNlOiAiQ09NUExFVEUiLCBzdGF0dXM6ICJTVUNDRUVERUQiLAogICAgICAgICAgICBsaXN0ZW5lcl9nZW5lcmF0aW9uOiBTdHJpbmcobGlzdGVuZXJHZW5lcmF0aW9uKSwKICAgICAgICAgICAgZGV0YWlsX2NvZGU6ICJMSVNURU5FUlNfSU5TVEFMTEVEIgogICAgICAgIH0pOwogICAgICAg";
    encoded = encoded + "IHJldHVybiAiSU5TVEFMTEVEIjsKICAgIH0KCiAgICBmdW5jdGlvbiBwcmVwYXJlSW1hZ2VTd2l0Y2gob2xkSW1wKSB7CiAgICAgICAgdmFyIHBsYW47CiAgICAgICAgaWYgKG9sZEltcCA9PSBudWxsKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5WQUxJRF9PUEVSQVRJT05fQ09OVEVYVDogbm8gb2xk";
    encoded = encoded + "IGltYWdlIik7CiAgICAgICAgfQogICAgICAgIHBsYW4gPSB7CiAgICAgICAgICAgIG9sZEltcDogb2xkSW1wLAogICAgICAgICAgICBvbGRDb250ZXh0OiBjYXB0dXJlKG9sZEltcCwgIklNQUdFX1NXSVRDSCIpLAogICAgICAgICAgICByZXF1ZXN0SWQ6IHRlbGVtZXRyeUlkKCksCiAgICAgICAgICAgIG9sZFNlbGVj";
    encoded = encoded + "dGlvblJldmlzaW9uOiBpbWFnZVByb3BlcnR5KG9sZEltcCwgIkNUTC5QMS5zZWxlY3Rpb25fcmV2aXNpb24iLCAiMCIpLAogICAgICAgICAgICBvbGRHZW5lcmF0aW9uOiBpbWFnZVByb3BlcnR5KG9sZEltcCwgIkNUTC5QMS5nZW5lcmF0aW9uX3Rva2VuIiwgIjAiKSwKICAgICAgICAgICAgb2xkVW5kbzogaW1hZ2VQ";
    encoded = encoded + "cm9wZXJ0eShvbGRJbXAsICJDVEwuUDEudW5kb19zdGF0ZSIsICIiKSwKICAgICAgICAgICAgcHJlcGFyZWRBdDogU3RyaW5nKFN5c3RlbS5jdXJyZW50VGltZU1pbGxpcygpKQogICAgICAgIH07CiAgICAgICAgcmVnaXN0cnlQdXQoU1dJVENIX0tFWSwgcGxhbik7CiAgICAgICAgdGVsZW1ldHJ5UmVjb3JkKHsKICAg";
    encoded = encoded + "ICAgICAgICAgZXZlbnRfdHlwZTogIklNQUdFX1NXSVRDSF9SRVFVRVNURUQiLCBpbXA6IG9sZEltcCwKICAgICAgICAgICAgb3duZXJfY29udGV4dDogcGxhbi5vbGRDb250ZXh0LCByZXF1ZXN0X2lkOiBwbGFuLnJlcXVlc3RJZCwKICAgICAgICAgICAgb3BlcmF0aW9uOiAiU0VMRUNUX1BST0pFQ1RfSU1BR0UiLCBw";
    encoded = encoded + "aGFzZTogIlBSRVBBUkUiLCBzdGF0dXM6ICJTVEFSVEVEIiwKICAgICAgICAgICAgZGV0YWlsX2NvZGU6ICJJTUFHRV9TV0lUQ0hfUFJFUEFSRUQiCiAgICAgICAgfSk7CiAgICAgICAgcmV0dXJuIHBsYW4ub2xkQ29udGV4dC5jb250ZXh0X2ZpbmdlcnByaW50X3NoYTI1NjsKICAgIH0KCiAgICBmdW5jdGlvbiBjYW5j";
    encoded = encoded + "ZWxJbWFnZVN3aXRjaCh0b2tlbikgewogICAgICAgIHZhciBwbGFuID0gcmVnaXN0cnlHZXQoU1dJVENIX0tFWSk7CiAgICAgICAgaWYgKHBsYW4gPT0gbnVsbCB8fCBwbGFuLm9sZENvbnRleHQuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYgIT09IFN0cmluZyh0b2tlbikpIHsKICAgICAgICAgICAgcmV0dXJuICJO";
    encoded = encoded + "T19NQVRDSElOR19QTEFOIjsKICAgICAgICB9CiAgICAgICAgLy8gQ2FuY2VsbGF0aW9uIGlzIGludGVudGlvbmFsbHkgbXV0YXRpb24tZnJlZS4KICAgICAgICByZWdpc3RyeVB1dChTV0lUQ0hfS0VZLCBudWxsKTsKICAgICAgICB0ZWxlbWV0cnlSZWNvcmQoewogICAgICAgICAgICBldmVudF90eXBlOiAiSU1BR0Vf";
    encoded = encoded + "U1dJVENIX0NBTkNFTExFRCIsIGltcDogcGxhbi5vbGRJbXAsCiAgICAgICAgICAgIG93bmVyX2NvbnRleHQ6IHBsYW4ub2xkQ29udGV4dCwgcmVxdWVzdF9pZDogcGxhbi5yZXF1ZXN0SWQsCiAgICAgICAgICAgIG9wZXJhdGlvbjogIlNFTEVDVF9QUk9KRUNUX0lNQUdFIiwgcGhhc2U6ICJDQU5DRUwiLCBzdGF0dXM6";
    encoded = encoded + "ICJDQU5DRUxMRUQiLAogICAgICAgICAgICBkZXRhaWxfY29kZTogIklNQUdFX1NXSVRDSF9PUEVSQVRPUl9DQU5DRUxMRUQiCiAgICAgICAgfSk7CiAgICAgICAgcmV0dXJuICJDQU5DRUxMRURfQ09OVEVYVF9VTkNIQU5HRUQiOwogICAgfQoKICAgIGZ1bmN0aW9uIGNvbW1pdEltYWdlU3dpdGNoKHRva2VuLCBuZXdJ";
    encoded = encoded + "bXApIHsKICAgICAgICB2YXIgcGxhbiA9IHJlZ2lzdHJ5R2V0KFNXSVRDSF9LRVkpOwogICAgICAgIGlmIChwbGFuID09IG51bGwgfHwgcGxhbi5vbGRDb250ZXh0LmNvbnRleHRfZmluZ2VycHJpbnRfc2hhMjU2ICE9PSBTdHJpbmcodG9rZW4pIHx8IG5ld0ltcCA9PSBudWxsKSB7CiAgICAgICAgICAgIHJldHVybiAi";
    encoded = encoded + "Tk9fTUFUQ0hJTkdfUExBTiI7CiAgICAgICAgfQogICAgICAgIGlmICghc2FtZUltYWdlQ29udGV4dChwbGFuLm9sZENvbnRleHQsIGZhbHNlKSkgewogICAgICAgICAgICByZWdpc3RyeVB1dChTV0lUQ0hfS0VZLCBudWxsKTsKICAgICAgICAgICAgYXVkaXRTdGFsZShwbGFuLm9sZENvbnRleHQsICJJTUFHRV9TV0lU";
    encoded = encoded + "Q0giKTsKICAgICAgICAgICAgdGVsZW1ldHJ5UmVjb3JkKHsKICAgICAgICAgICAgICAgIGV2ZW50X3R5cGU6ICJJTUFHRV9TV0lUQ0hfQ0FOQ0VMTEVEIiwgaW1wOiBwbGFuLm9sZEltcCwKICAgICAgICAgICAgICAgIG93bmVyX2NvbnRleHQ6IHBsYW4ub2xkQ29udGV4dCwgcmVxdWVzdF9pZDogcGxhbi5yZXF1ZXN0";
    encoded = encoded + "SWQsCiAgICAgICAgICAgICAgICBvcGVyYXRpb246ICJTRUxFQ1RfUFJPSkVDVF9JTUFHRSIsIHBoYXNlOiAiQ0FOQ0VMIiwgc3RhdHVzOiAiUkVKRUNURURfU1RBTEUiLAogICAgICAgICAgICAgICAgZGV0YWlsX2NvZGU6ICJJTUFHRV9TV0lUQ0hfU1RBTEVfQ09OVEVYVCIKICAgICAgICAgICAgfSk7CiAgICAgICAg";
    encoded = encoded + "ICAgIHJldHVybiAiU1RBTEVfQ09OVEVYVF9DQU5DRUxMRUQiOwogICAgICAgIH0KICAgICAgICB0ZWFyZG93bihwbGFuLm9sZEltcCk7CiAgICAgICAgcGxhbi5vbGRJbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5zZWxlY3Rpb25fcmV2aXNpb24iLCAiMCIpOwogICAgICAgIHBsYW4ub2xkSW1wLnNldFByb3BlcnR5KCJD";
    encoded = encoded + "VEwuUDEudW5kb19zdGF0ZSIsICIiKTsKICAgICAgICBpZiAoaW1hZ2VQcm9wZXJ0eShuZXdJbXAsICJDVEwuUDEuZ2VuZXJhdGlvbl90b2tlbiIsICIiKSA9PT0gIiIpIHsKICAgICAgICAgICAgbmV3SW1wLnNldFByb3BlcnR5KCJDVEwuUDEuZ2VuZXJhdGlvbl90b2tlbiIsICIxIik7CiAgICAgICAgfSBlbHNlIHsK";
    encoded = encoded + "ICAgICAgICAgICAgYnVtcENvdW50ZXIobmV3SW1wLCAiQ1RMLlAxLmdlbmVyYXRpb25fdG9rZW4iKTsKICAgICAgICB9CiAgICAgICAgbmV3SW1wLnNldFByb3BlcnR5KCJDVEwuUDEuc2VsZWN0aW9uX3JldmlzaW9uIiwgIjAiKTsKICAgICAgICBuZXdJbXAuc2V0UHJvcGVydHkoIkNUTC5QMS51bmRvX3N0YXRlIiwg";
    encoded = encoded + "IiIpOwogICAgICAgIHJlZ2lzdHJ5UHV0KFNXSVRDSF9LRVksIG51bGwpOwogICAgICAgIHRlbGVtZXRyeVJlY29yZCh7CiAgICAgICAgICAgIGV2ZW50X3R5cGU6ICJJTUFHRV9TV0lUQ0hfUkVRVUVTVEVEIiwgaW1wOiBuZXdJbXAsCiAgICAgICAgICAgIG93bmVyX2NvbnRleHQ6IHBsYW4ub2xkQ29udGV4dCwgcmVx";
    encoded = encoded + "dWVzdF9pZDogcGxhbi5yZXF1ZXN0SWQsCiAgICAgICAgICAgIG9wZXJhdGlvbjogIlNFTEVDVF9QUk9KRUNUX0lNQUdFIiwgcGhhc2U6ICJDT01QTEVURSIsIHN0YXR1czogIlNVQ0NFRURFRCIsCiAgICAgICAgICAgIGRldGFpbF9jb2RlOiAiSU1BR0VfU1dJVENIX0NPTU1JVFRFRCIKICAgICAgICB9KTsKICAgICAg";
    encoded = encoded + "ICByZXR1cm4gaW5zdGFsbChuZXdJbXApOwogICAgfQoKICAgIGZ1bmN0aW9uIHVwZGF0ZURpZ2VzdEJ5dGUoZGlnZXN0LCB2YWx1ZSkgewogICAgICAgIHZhciBieXRlcyA9IGphdmEubGFuZy5yZWZsZWN0LkFycmF5Lm5ld0luc3RhbmNlKGphdmEubGFuZy5CeXRlLlRZUEUsIDEpOwogICAgICAgIGJ5dGVzWzBdID0g";
    encoded = encoded + "dmFsdWUgPiAxMjcgPyB2YWx1ZSAtIDI1NiA6IHZhbHVlOwogICAgICAgIGRpZ2VzdC51cGRhdGUoYnl0ZXMpOwogICAgfQoKICAgIGZ1bmN0aW9uIHVwZGF0ZURpZ2VzdEludExFKGRpZ2VzdCwgdmFsdWUsIGJ5dGVDb3VudCkgewogICAgICAgIHZhciBpOwogICAgICAgIGZvciAoaSA9IDA7IGkgPCBieXRlQ291bnQ7";
    encoded = encoded + "IGkgKz0gMSkgewogICAgICAgICAgICB1cGRhdGVEaWdlc3RCeXRlKGRpZ2VzdCwgKHZhbHVlID4+PiAoOCAqIGkpKSAmIDI1NSk7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIG5vcm1hbGl6ZWRQaXhlbEhhc2goaW1wKSB7CiAgICAgICAgdmFyIHByb2Nlc3NvcjsKICAgICAgICB2YXIgcGl4ZWxzOwogICAg";
    encoded = encoded + "ICAgIHZhciBiaXREZXB0aDsKICAgICAgICB2YXIgaGVhZGVyOwogICAgICAgIHZhciBkaWdlc3Q7CiAgICAgICAgdmFyIGk7CiAgICAgICAgdmFyIHZhbHVlOwogICAgICAgIGlmIChpbXAgPT0gbnVsbCB8fCBpbXAuZ2V0U3RhY2tTaXplKCkgIT09IDEgfHwgaW1wLmdldE5DaGFubmVscygpICE9PSAxIHx8CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICBpbXAuZ2V0TlNsaWNlcygpICE9PSAxIHx8IGltcC5nZXRORnJhbWVzKCkgIT09IDEpIHsKICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJQSVhFTF9IQVNIX1VOU1VQUE9SVEVEX0RJTUVOU0lPTlMiKTsKICAgICAgICB9CiAgICAgICAgcHJvY2Vzc29yID0gaW1wLmdldFByb2Nlc3NvcigpOwog";
    encoded = encoded + "ICAgICAgIHBpeGVscyA9IHByb2Nlc3Nvci5nZXRQaXhlbHMoKTsKICAgICAgICBiaXREZXB0aCA9IGltcC5nZXRCaXREZXB0aCgpOwogICAgICAgIGhlYWRlciA9IFBJWEVMX0hBU0hfTUVUSE9EICsgIlxud2lkdGg9IiArIGltcC5nZXRXaWR0aCgpICsgIlxuaGVpZ2h0PSIgKyBpbXAuZ2V0SGVpZ2h0KCkgKwogICAg";
    encoded = encoded + "ICAgICAgICAiXG5iaXRfZGVwdGg9IiArIGJpdERlcHRoICsgIlxuY2hhbm5lbHM9MVxuc2xpY2VzPTFcbmZyYW1lcz0xXG5ieXRlX29yZGVyPUxJVFRMRV9FTkRJQU5cbiI7CiAgICAgICAgZGlnZXN0ID0gTWVzc2FnZURpZ2VzdC5nZXRJbnN0YW5jZSgiU0hBLTI1NiIpOwogICAgICAgIGRpZ2VzdC51cGRhdGUobmV3";
    encoded = encoded + "IGphdmEubGFuZy5TdHJpbmcoaGVhZGVyKS5nZXRCeXRlcyhTdGFuZGFyZENoYXJzZXRzLlVURl84KSk7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IHBpeGVscy5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICBpZiAoYml0RGVwdGggPT09IDgpIHsKICAgICAgICAgICAgICAgIHZhbHVlID0gcGl4ZWxzW2ldOwog";
    encoded = encoded + "ICAgICAgICAgICAgICAgaWYgKHZhbHVlIDwgMCkgewogICAgICAgICAgICAgICAgICAgIHZhbHVlICs9IDI1NjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIHVwZGF0ZURpZ2VzdEJ5dGUoZGlnZXN0LCB2YWx1ZSk7CiAgICAgICAgICAgIH0gZWxzZSBpZiAoYml0RGVwdGggPT09IDE2KSB7CiAgICAg";
    encoded = encoded + "ICAgICAgICAgICB2YWx1ZSA9IHBpeGVsc1tpXTsKICAgICAgICAgICAgICAgIGlmICh2YWx1ZSA8IDApIHsKICAgICAgICAgICAgICAgICAgICB2YWx1ZSArPSA2NTUzNjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIHVwZGF0ZURpZ2VzdEludExFKGRpZ2VzdCwgdmFsdWUsIDIpOwogICAgICAgICAg";
    encoded = encoded + "ICB9IGVsc2UgaWYgKGJpdERlcHRoID09PSAyNCkgewogICAgICAgICAgICAgICAgdmFsdWUgPSBwaXhlbHNbaV07CiAgICAgICAgICAgICAgICB1cGRhdGVEaWdlc3RCeXRlKGRpZ2VzdCwgKHZhbHVlID4+PiAxNikgJiAyNTUpOwogICAgICAgICAgICAgICAgdXBkYXRlRGlnZXN0Qnl0ZShkaWdlc3QsICh2YWx1ZSA+";
    encoded = encoded + "Pj4gOCkgJiAyNTUpOwogICAgICAgICAgICAgICAgdXBkYXRlRGlnZXN0Qnl0ZShkaWdlc3QsIHZhbHVlICYgMjU1KTsKICAgICAgICAgICAgfSBlbHNlIGlmIChiaXREZXB0aCA9PT0gMzIpIHsKICAgICAgICAgICAgICAgIHZhbHVlID0gamF2YS5sYW5nLkZsb2F0LmZsb2F0VG9SYXdJbnRCaXRzKHBpeGVsc1tpXSk7";
    encoded = encoded + "CiAgICAgICAgICAgICAgICB1cGRhdGVEaWdlc3RJbnRMRShkaWdlc3QsIHZhbHVlLCA0KTsKICAgICAgICAgICAgfSBlbHNlIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiUElYRUxfSEFTSF9VTlNVUFBPUlRFRF9CSVRfREVQVEgiKTsKICAgICAgICAgICAgfQogICAgICAgIH0KICAgICAgICByZXR1";
    encoded = encoded + "cm4gaGV4KGRpZ2VzdC5kaWdlc3QoKSk7CiAgICB9CgogICAgZnVuY3Rpb24gZmlsZVNoYTI1NihwYXRoKSB7CiAgICAgICAgdmFyIGRpZ2VzdCA9IE1lc3NhZ2VEaWdlc3QuZ2V0SW5zdGFuY2UoIlNIQS0yNTYiKTsKICAgICAgICB2YXIgaW5wdXQgPSBudWxsOwogICAgICAgIHZhciBidWZmZXIgPSBqYXZhLmxhbmcu";
    encoded = encoded + "cmVmbGVjdC5BcnJheS5uZXdJbnN0YW5jZShqYXZhLmxhbmcuQnl0ZS5UWVBFLCAxMDQ4NTc2KTsKICAgICAgICB2YXIgY291bnQ7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgaW5wdXQgPSBuZXcgQnVmZmVyZWRJbnB1dFN0cmVhbShuZXcgRmlsZUlucHV0U3RyZWFtKG5ldyBGaWxlKFN0cmluZyhwYXRoKSkpKTsK";
    encoded = encoded + "ICAgICAgICAgICAgd2hpbGUgKChjb3VudCA9IGlucHV0LnJlYWQoYnVmZmVyKSkgIT09IC0xKSB7CiAgICAgICAgICAgICAgICBkaWdlc3QudXBkYXRlKGJ1ZmZlciwgMCwgY291bnQpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIHJldHVybiBoZXgoZGlnZXN0LmRpZ2VzdCgpKTsKICAgICAgICB9IGZpbmFsbHkg";
    encoded = encoded + "ewogICAgICAgICAgICBpZiAoaW5wdXQgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgaW5wdXQuY2xvc2UoKTsKICAgICAgICAgICAgfQogICAgICAgIH0KICAgIH0KCiAgICBmdW5jdGlvbiB2ZXJpZnlNYXN0ZXIoaW1wLCBzb3VyY2VQYXRoLCBleHBlY3RlZFNvdXJjZVNoYSwgZXhwZWN0ZWRQaXhlbFNoYSkgewog";
    encoded = encoded + "ICAgICAgIHZhciBhY3R1YWxTb3VyY2U7CiAgICAgICAgdmFyIGFjdHVhbFBpeGVsOwogICAgICAgIHZhciBzdGF0dXM7CiAgICAgICAgaWYgKGltcCA9PSBudWxsKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiTk9fSU1BR0UiKTsKICAgICAgICB9CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEu";
    encoded = encoded + "aW1hZ2Vfcm9sZSIsICJNQVNURVJfUkVBRF9PTkxZIik7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubWFzdGVyX3BpeGVsX2hhc2hfbWV0aG9kIiwgUElYRUxfSEFTSF9NRVRIT0QpOwogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLm1hc3Rlcl93aWR0aF9weCIsIFN0cmluZyhpbXAuZ2V0V2lk";
    encoded = encoded + "dGgoKSkpOwogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLm1hc3Rlcl9oZWlnaHRfcHgiLCBTdHJpbmcoaW1wLmdldEhlaWdodCgpKSk7CiAgICAgICAgaWYgKCEvXlswLTlhLWZdezY0fSQvLnRlc3QoU3RyaW5nKGV4cGVjdGVkU291cmNlU2hhKSkgfHwKICAgICAgICAgICAgICAgICEvXlswLTlhLWZdezY0";
    encoded = encoded + "fSQvLnRlc3QoU3RyaW5nKGV4cGVjdGVkUGl4ZWxTaGEpKSB8fAogICAgICAgICAgICAgICAgc291cmNlUGF0aCA9PSBudWxsIHx8IFN0cmluZyhzb3VyY2VQYXRoKSA9PT0gIiIgfHwgIW5ldyBGaWxlKFN0cmluZyhzb3VyY2VQYXRoKSkuaXNGaWxlKCkpIHsKICAgICAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwu";
    encoded = encoded + "UDEuc291cmNlX2hhc2hfc3RhdHVzIiwgIk5PVF9WRVJJRklFRCIpOwogICAgICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5tYXN0ZXJfcGl4ZWxfaGFzaF9zdGF0dXMiLCAiTk9UX1ZFUklGSUVEIik7CiAgICAgICAgICAgIHRlbGVtZXRyeU1hc3RlclZlcmlmaWNhdGlvbihpbXAsICJOT1RfVkVSSUZJRUQi";
    encoded = encoded + "LCAiTUFTVEVSX0lOUFVUX05PVF9WRVJJRklFRCIpOwogICAgICAgICAgICByZXR1cm4gIk5PVF9WRVJJRklFRCI7CiAgICAgICAgfQogICAgICAgIHRyeSB7CiAgICAgICAgICAgIGFjdHVhbFNvdXJjZSA9IGZpbGVTaGEyNTYoc291cmNlUGF0aCk7CiAgICAgICAgICAgIGFjdHVhbFBpeGVsID0gbm9ybWFsaXplZFBp";
    encoded = encoded + "eGVsSGFzaChpbXApOwogICAgICAgIH0gY2F0Y2ggKGVycm9yKSB7CiAgICAgICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLnNvdXJjZV9oYXNoX3N0YXR1cyIsICJOT1RfVkVSSUZJRUQiKTsKICAgICAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubWFzdGVyX3BpeGVsX2hhc2hfc3RhdHVzIiwgIk5P";
    encoded = encoded + "VF9WRVJJRklFRCIpOwogICAgICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5tYXN0ZXJfcGl4ZWxfaGFzaF9lcnJvciIsIFN0cmluZyhlcnJvcikpOwogICAgICAgICAgICB0ZWxlbWV0cnlNYXN0ZXJWZXJpZmljYXRpb24oaW1wLCAiTk9UX1ZFUklGSUVEIiwgIk1BU1RFUl9IQVNIX05PVF9WRVJJRklFRCIp";
    encoded = encoded + "OwogICAgICAgICAgICByZXR1cm4gIk5PVF9WRVJJRklFRCI7CiAgICAgICAgfQogICAgICAgIGltcC5zZXRQcm9wZXJ0eSgiQ1RMLlAxLnNvdXJjZV9zaGEyNTZfYWN0dWFsIiwgYWN0dWFsU291cmNlKTsKICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5tYXN0ZXJfcGl4ZWxfc2hhMjU2X2FjdHVhbCIsIGFj";
    encoded = encoded + "dHVhbFBpeGVsKTsKICAgICAgICBpbXAuc2V0UHJvcGVydHkoIkNUTC5QMS5zb3VyY2Vfc2hhMjU2IiwgU3RyaW5nKGV4cGVjdGVkU291cmNlU2hhKSk7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubWFzdGVyX3BpeGVsX3NoYTI1NiIsIFN0cmluZyhleHBlY3RlZFBpeGVsU2hhKSk7CiAgICAgICAgaW1w";
    encoded = encoded + "LnNldFByb3BlcnR5KCJDVEwuUDEuc291cmNlX2hhc2hfc3RhdHVzIiwgYWN0dWFsU291cmNlID09PSBTdHJpbmcoZXhwZWN0ZWRTb3VyY2VTaGEpID8gIlZFUklGSUVEIiA6ICJNSVNNQVRDSCIpOwogICAgICAgIHN0YXR1cyA9IGFjdHVhbFBpeGVsID09PSBTdHJpbmcoZXhwZWN0ZWRQaXhlbFNoYSkgJiYgYWN0dWFs";
    encoded = encoded + "U291cmNlID09PSBTdHJpbmcoZXhwZWN0ZWRTb3VyY2VTaGEpID8gIlZFUklGSUVEIiA6ICJNSVNNQVRDSCI7CiAgICAgICAgaW1wLnNldFByb3BlcnR5KCJDVEwuUDEubWFzdGVyX3BpeGVsX2hhc2hfc3RhdHVzIiwgc3RhdHVzKTsKICAgICAgICB0ZWxlbWV0cnlNYXN0ZXJWZXJpZmljYXRpb24oCiAgICAgICAgICAg";
    encoded = encoded + "IGltcCwgc3RhdHVzLCBzdGF0dXMgPT09ICJWRVJJRklFRCIgPyAiTUFTVEVSX0hBU0hfVkVSSUZJRUQiIDogIk1BU1RFUl9IQVNIX01JU01BVENIIgogICAgICAgICk7CiAgICAgICAgcmV0dXJuIHN0YXR1czsKICAgIH0KCiAgICBmdW5jdGlvbiBkZWNvZGVWZXJpZmllZFJvaVppcChieXRlcywgZXhwZWN0ZWRDb3Vu";
    encoded = encoded + "dCkgewogICAgICAgIHZhciBpbnB1dCA9IG5ldyBaaXBJbnB1dFN0cmVhbShuZXcgQnl0ZUFycmF5SW5wdXRTdHJlYW0oYnl0ZXMpKTsKICAgICAgICB2YXIgYnVmZmVyID0gYnl0ZUFycmF5KDgxOTIpOwogICAgICAgIHZhciByb2lzID0gW107CiAgICAgICAgdmFyIGVudHJ5OwogICAgICAgIHZhciBvdXRwdXQ7CiAg";
    encoded = encoded + "ICAgICAgdmFyIGNvdW50OwogICAgICAgIHZhciByb2k7CiAgICAgICAgdHJ5IHsKICAgICAgICAgICAgd2hpbGUgKChlbnRyeSA9IGlucHV0LmdldE5leHRFbnRyeSgpKSAhPSBudWxsKSB7CiAgICAgICAgICAgICAgICBpZiAoZW50cnkuaXNEaXJlY3RvcnkoKSkgewogICAgICAgICAgICAgICAgICAgIHRocm93IG5l";
    encoded = encoded + "dyBFcnJvcigiTE9BRF9SRVZJU0lPTl9ST0lfWklQX0RJUkVDVE9SWV9FTlRSWSIpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgb3V0cHV0ID0gbmV3IEJ5dGVBcnJheU91dHB1dFN0cmVhbSgpOwogICAgICAgICAgICAgICAgd2hpbGUgKChjb3VudCA9IGlucHV0LnJlYWQoYnVmZmVyLCAwLCBidWZm";
    encoded = encoded + "ZXIubGVuZ3RoKSkgIT09IC0xKSB7CiAgICAgICAgICAgICAgICAgICAgb3V0cHV0LndyaXRlKGJ1ZmZlciwgMCwgY291bnQpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgcm9pID0gbmV3IFJvaURlY29kZXIob3V0cHV0LnRvQnl0ZUFycmF5KCksIFN0cmluZyhlbnRyeS5nZXROYW1lKCkpKS5nZXRS";
    encoded = encoded + "b2koKTsKICAgICAgICAgICAgICAgIGlmIChyb2kgPT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiTE9BRF9SRVZJU0lPTl9ST0lfREVDT0RFX0ZBSUxFRDoiICsgZW50cnkuZ2V0TmFtZSgpKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIHJvaXMucHVzaChyb2kp";
    encoded = encoded + "OwogICAgICAgICAgICAgICAgaW5wdXQuY2xvc2VFbnRyeSgpOwogICAgICAgICAgICB9CiAgICAgICAgfSBmaW5hbGx5IHsKICAgICAgICAgICAgaW5wdXQuY2xvc2UoKTsKICAgICAgICB9CiAgICAgICAgaWYgKHJvaXMubGVuZ3RoICE9PSBOdW1iZXIoZXhwZWN0ZWRDb3VudCkpIHsKICAgICAgICAgICAgdGhyb3cg";
    encoded = encoded + "bmV3IEVycm9yKCJMT0FEX1JFVklTSU9OX1JPSV9DT1VOVF9NSVNNQVRDSCIpOwogICAgICAgIH0KICAgICAgICByZXR1cm4gcm9pczsKICAgIH0KCiAgICBmdW5jdGlvbiBhcHBseVZlcmlmaWVkUmV2aXNpb25Mb2FkKGltcCwgcmVzcG9uc2VSYXcpIHsKICAgICAgICB2YXIgcmVzcG9uc2U7CiAgICAgICAgdmFyIHJl";
    encoded = encoded + "c3VsdDsKICAgICAgICB2YXIgd29ya2luZzsKICAgICAgICB2YXIgcG9pbnRlcjsKICAgICAgICB2YXIgcnVuQmluZGluZzsKICAgICAgICB2YXIgbGl2ZTsKICAgICAgICB2YXIgemlwQnl0ZXM7CiAgICAgICAgdmFyIGRlY29kZWQ7CiAgICAgICAgdmFyIG1hbmFnZXI7CiAgICAgICAgdmFyIG9sZFJvaXM7CiAgICAg";
    encoded = encoded + "ICAgdmFyIG9sZENsb25lcyA9IFtdOwogICAgICAgIHZhciBvbGRTZWxlY3RlZDsKICAgICAgICB2YXIgb2xkQWN0aXZlOwogICAgICAgIHZhciBwcm9wZXJ0eUtleXMgPSBbCiAgICAgICAgICAgICJDVEwuUDEucmV2aXNpb25faWQiLCAiQ1RMLlAxLnJldmlzaW9uX3VpZCIsICJDVEwuUDEud29ya2luZ19zdGF0ZV9p";
    encoded = encoded + "ZCIsCiAgICAgICAgICAgICJDVEwuUDEucGFyZW50X3JldmlzaW9uX2lkIiwgIkNUTC5QMS5wYXJlbnRfcmV2aXNpb25fdWlkIiwKICAgICAgICAgICAgIkNUTC5QMS5iYXNlX3JldmlzaW9uX21hbmlmZXN0X3NoYTI1NiIsICJDVEwuUDEuYmFzZV9yZXZpc2lvbl9yb2lfemlwX3NoYTI1NiIsCiAgICAgICAgICAgICJD";
    encoded = encoded + "VEwuUDEubG9hZGVkX3JldmlzaW9uX21ldGFkYXRhX3NoYTI1NiIsICJDVEwuUDEubG9hZGVkX3JldmlzaW9uX3BvaW50ZXJfc2hhMjU2IiwKICAgICAgICAgICAgIkNUTC5QMS5sb2FkZWRfcmV2aXNpb25fc2VsZWN0ZWRfaXNfY3VycmVudCIsICJDVEwuUDEuY3VycmVudF9ydW5faWQiLAogICAgICAgICAgICAiQ1RM";
    encoded = encoded + "LlAxLmN1cnJlbnRfcnVuX3VpZCIsICJDVEwuUDEuY3VycmVudF9ydW5fbWFuaWZlc3Rfc2hhMjU2IiwKICAgICAgICAgICAgIkNUTC5QMS5jdXJyZW50X3J1bl9iaW5kaW5nX3N0YXR1cyIsICJDVEwuUDEuY3VycmVudF9ydW5fcG9pbnRlcl9zaGEyNTZfYmVmb3JlIiwKICAgICAgICAgICAgIkNUTC5QMS5zZWxlY3Rp";
    encoded = encoded + "b25fcmV2aXNpb24iLCAiQ1RMLlAxLmdlbmVyYXRpb25fdG9rZW4iLCAiQ1RMLlAxLmxhc3RfZXZlbnQiLAogICAgICAgICAgICAiQ1RMLlAxLmxhc3RfZXZlbnRfZGV0YWlsIiwgIkNUTC5QMS5sYXN0X2V2ZW50X211dGF0aW9ucyIsCiAgICAgICAgICAgICJDVEwuUDEubGFzdF9ldmVudF9yb2lfbWFuYWdlcl9jaGFu";
    encoded = encoded + "Z2VzIiwgIkNUTC5QMS5sYXN0X2V2ZW50X2Rpc2tfd3JpdGVzIgogICAgICAgIF07CiAgICAgICAgdmFyIG9sZFByb3BlcnRpZXMgPSBbXTsKICAgICAgICB2YXIgbXV0YXRlZCA9IGZhbHNlOwogICAgICAgIHZhciBpOwogICAgICAgIGZ1bmN0aW9uIHJlcXVpcmVTaGEodmFsdWUsIGxhYmVsKSB7CiAgICAgICAgICAg";
    encoded = encoded + "IGlmICghL15bMC05YS1mXXs2NH0kLy50ZXN0KFN0cmluZyh2YWx1ZSkpKSB7CiAgICAgICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVkFMSURfTE9BRF9SRVZJU0lPTl9TSEE6IiArIGxhYmVsKTsKICAgICAgICAgICAgfQogICAgICAgIH0KICAgICAgICBmdW5jdGlvbiBwdXQoa2V5LCB2YWx1ZSkgewogICAg";
    encoded = encoded + "ICAgICAgICBpbXAuc2V0UHJvcGVydHkoa2V5LCBTdHJpbmcodmFsdWUpKTsKICAgICAgICB9CiAgICAgICAgaWYgKGltcCA9PSBudWxsKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiTE9BRF9SRVZJU0lPTl9OT19JTUFHRSIpOwogICAgICAgIH0KICAgICAgICByZXNwb25zZSA9IEpTT04ucGFyc2UoU3Ry";
    encoded = encoded + "aW5nKHJlc3BvbnNlUmF3KSk7CiAgICAgICAgaWYgKFN0cmluZyhyZXNwb25zZS5zY2hlbWEgfHwgIiIpICE9PSAiQ1RMX0lKTV9CUklER0VfUkVTUE9OU0VfVjEiIHx8CiAgICAgICAgICAgICAgICBTdHJpbmcocmVzcG9uc2Uub3BlcmF0aW9uIHx8ICIiKSAhPT0gImxvYWRfcmV2aXNpb24iIHx8CiAgICAgICAgICAg";
    encoded = encoded + "ICAgICBTdHJpbmcocmVzcG9uc2UucGhhc2UgfHwgIiIpICE9PSAiRVhFQ1VURSIgfHwKICAgICAgICAgICAgICAgIFN0cmluZyhyZXNwb25zZS5zdGF0dXMgfHwgIiIpICE9PSAiUEFTUyIgfHwKICAgICAgICAgICAgICAgIChyZXNwb25zZS5lcnJvcnMgfHwgW10pLmxlbmd0aCAhPT0gMCkgewogICAgICAgICAgICB0";
    encoded = encoded + "aHJvdyBuZXcgRXJyb3IoIklOVkFMSURfTE9BRF9SRVZJU0lPTl9CUklER0VfUkVTUE9OU0UiKTsKICAgICAgICB9CiAgICAgICAgcmVzdWx0ID0gZXhhY3RPYmplY3RLZXlzKHJlc3BvbnNlLnJlc3VsdCwgWwogICAgICAgICAgICAicmVzdWx0IiwgImxvYWRfc2NoZW1hIiwgInNvdXJjZV9jb250ZXh0X2ZpbmdlcnBy";
    encoded = encoded + "aW50X3NoYTI1NiIsICJwcm9qZWN0X3VpZCIsCiAgICAgICAgICAgICJpbWFnZV91aWQiLCAiYW5hbHlzaXNfc2Vzc2lvbl91aWQiLCAic291cmNlX3NoYTI1NiIsICJtYXN0ZXJfcGl4ZWxfc2hhMjU2IiwKICAgICAgICAgICAgInJldmlzaW9uX2lkIiwgInJldmlzaW9uX3VpZCIsICJwYXJlbnRfcmV2aXNpb25faWQi";
    encoded = encoded + "LAogICAgICAgICAgICAicmV2aXNpb25fbWFuaWZlc3Rfc2hhMjU2IiwgInJldmlzaW9uX21ldGFkYXRhX3NoYTI1NiIsICJyb2lfemlwX3NoYTI1NiIsCiAgICAgICAgICAgICJyb2lfemlwX2J5dGVzIiwgInJvaV9jb3VudCIsICJyb2lfemlwX2Jhc2U2NCIsICJ3b3JraW5nX3N0YXRlIiwKICAgICAgICAgICAgImN1";
    encoded = encoded + "cnJlbnRfcmV2aXNpb25fcG9pbnRlciIsICJzZWxlY3RlZF9pc19jdXJyZW50IiwgImN1cnJlbnRfcnVuX2JpbmRpbmciLAogICAgICAgICAgICAicHJvamVjdF9tdXRhdGlvbnMiLCAicmV2aXNpb25fbXV0YXRpb25zIiwgInBvaW50ZXJfbXV0YXRpb25zIgogICAgICAgIF0sICJMT0FEX1JFVklTSU9OX1JFU1VMVCIp";
    encoded = encoded + "OwogICAgICAgIGlmIChyZXN1bHQucmVzdWx0ICE9PSAiUkVWSVNJT05fVkVSSUZJRURfRk9SX0lOX01FTU9SWV9XT1JLSU5HX1NUQVRFIiB8fAogICAgICAgICAgICAgICAgcmVzdWx0LmxvYWRfc2NoZW1hICE9PSAiQ1RMX1AxX0xPQURfUkVWSVNJT05fUkVTUE9OU0VfVjEiIHx8CiAgICAgICAgICAgICAgICByZXN1";
    encoded = encoded + "bHQucHJvamVjdF9tdXRhdGlvbnMgIT09IDAgfHwgcmVzdWx0LnJldmlzaW9uX211dGF0aW9ucyAhPT0gMCB8fAogICAgICAgICAgICAgICAgcmVzdWx0LnBvaW50ZXJfbXV0YXRpb25zICE9PSAwIHx8IHR5cGVvZiByZXN1bHQuc2VsZWN0ZWRfaXNfY3VycmVudCAhPT0gImJvb2xlYW4iKSB7CiAgICAgICAgICAgIHRo";
    encoded = encoded + "cm93IG5ldyBFcnJvcigiSU5WQUxJRF9MT0FEX1JFVklTSU9OX1JFU1VMVF9TVEFURSIpOwogICAgICAgIH0KICAgICAgICB3b3JraW5nID0gZXhhY3RPYmplY3RLZXlzKHJlc3VsdC53b3JraW5nX3N0YXRlLCBbCiAgICAgICAgICAgICJkZXNjcmlwdG9yX3R5cGUiLCAid29ya2luZ19zdGF0ZV9pZCIsICJiYXNlX3Jl";
    encoded = encoded + "dmlzaW9uX2lkIiwgImJhc2VfcmV2aXNpb25fdWlkIiwKICAgICAgICAgICAgImJhc2VfcmV2aXNpb25fbWFuaWZlc3Rfc2hhMjU2IiwgInByb2plY3RfdWlkIiwgImltYWdlX3VpZCIsCiAgICAgICAgICAgICJhbmFseXNpc19zZXNzaW9uX3VpZCIsICJjcmVhdGVkX2F0IiwgImF1ZGl0IgogICAgICAgIF0sICJMT0FE";
    encoded = encoded + "X1JFVklTSU9OX1dPUktJTkdfU1RBVEUiKTsKICAgICAgICBleGFjdE9iamVjdEtleXMod29ya2luZy5hdWRpdCwgWyJldmVudF90eXBlIiwgIm9wZXJhdG9yX2lkIiwgInJlYXNvbiIsICJldmVudF9hdCJdLCAiTE9BRF9SRVZJU0lPTl9BVURJVCIpOwogICAgICAgIHBvaW50ZXIgPSBleGFjdE9iamVjdEtleXMocmVz";
    encoded = encoded + "dWx0LmN1cnJlbnRfcmV2aXNpb25fcG9pbnRlciwgWwogICAgICAgICAgICAicmVsYXRpdmVfcGF0aCIsICJwb2ludGVyX3NoYTI1NiIsICJnZW5lcmF0aW9uIiwgInJldmlzaW9uX2lkIiwKICAgICAgICAgICAgInJldmlzaW9uX3VpZCIsICJyZXZpc2lvbl9tYW5pZmVzdF9zaGEyNTYiCiAgICAgICAgXSwgIkxPQURf";
    encoded = encoded + "UkVWSVNJT05fUE9JTlRFUiIpOwogICAgICAgIHJ1bkJpbmRpbmcgPSBleGFjdE9iamVjdEtleXMocmVzdWx0LmN1cnJlbnRfcnVuX2JpbmRpbmcsIFsKICAgICAgICAgICAgImFjdGlvbiIsICJyZWxhdGl2ZV9wYXRoIiwgInBvaW50ZXJfc2hhMjU2X2JlZm9yZSIKICAgICAgICBdLCAiTE9BRF9SRVZJU0lPTl9SVU5f";
    encoded = encoded + "QklORElORyIpOwogICAgICAgIGlmICh3b3JraW5nLmRlc2NyaXB0b3JfdHlwZSAhPT0gIndvcmtpbmdfc3RhdGUiIHx8CiAgICAgICAgICAgICAgICB3b3JraW5nLmJhc2VfcmV2aXNpb25faWQgIT09IHJlc3VsdC5yZXZpc2lvbl9pZCB8fAogICAgICAgICAgICAgICAgd29ya2luZy5iYXNlX3JldmlzaW9uX3VpZCAh";
    encoded = encoded + "PT0gcmVzdWx0LnJldmlzaW9uX3VpZCB8fAogICAgICAgICAgICAgICAgd29ya2luZy5iYXNlX3JldmlzaW9uX21hbmlmZXN0X3NoYTI1NiAhPT0gcmVzdWx0LnJldmlzaW9uX21hbmlmZXN0X3NoYTI1NiB8fAogICAgICAgICAgICAgICAgd29ya2luZy5wcm9qZWN0X3VpZCAhPT0gcmVzdWx0LnByb2plY3RfdWlkIHx8";
    encoded = encoded + "IHdvcmtpbmcuaW1hZ2VfdWlkICE9PSByZXN1bHQuaW1hZ2VfdWlkIHx8CiAgICAgICAgICAgICAgICB3b3JraW5nLmFuYWx5c2lzX3Nlc3Npb25fdWlkICE9PSByZXN1bHQuYW5hbHlzaXNfc2Vzc2lvbl91aWQgfHwKICAgICAgICAgICAgICAgIHdvcmtpbmcuYXVkaXQuZXZlbnRfdHlwZSAhPT0gIldPUktJTkdfU1RB";
    encoded = encoded + "VEVfQ1JFQVRFRF9GUk9NX1JFVklTSU9OIiB8fAogICAgICAgICAgICAgICAgcnVuQmluZGluZy5hY3Rpb24gIT09ICJDTEVBUkVEX0lOX01FTU9SWV9OT19QT0lOVEVSX1dSSVRFIikgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIkxPQURfUkVWSVNJT05fTUVUQURBVEFfQklORElOR19NSVNNQVRDSCIpOwog";
    encoded = encoded + "ICAgICAgIH0KICAgICAgICBpZiAoIWlzRmluaXRlKE51bWJlcihyZXN1bHQucm9pX2NvdW50KSkgfHwKICAgICAgICAgICAgICAgIE1hdGguZmxvb3IoTnVtYmVyKHJlc3VsdC5yb2lfY291bnQpKSAhPT0gTnVtYmVyKHJlc3VsdC5yb2lfY291bnQpIHx8CiAgICAgICAgICAgICAgICBOdW1iZXIocmVzdWx0LnJvaV9j";
    encoded = encoded + "b3VudCkgPCAwIHx8CiAgICAgICAgICAgICAgICAhaXNGaW5pdGUoTnVtYmVyKHJlc3VsdC5yb2lfemlwX2J5dGVzKSkgfHwKICAgICAgICAgICAgICAgIE1hdGguZmxvb3IoTnVtYmVyKHJlc3VsdC5yb2lfemlwX2J5dGVzKSkgIT09IE51bWJlcihyZXN1bHQucm9pX3ppcF9ieXRlcykgfHwKICAgICAgICAgICAgICAg";
    encoded = encoded + "IE51bWJlcihyZXN1bHQucm9pX3ppcF9ieXRlcykgPCAwIHx8CiAgICAgICAgICAgICAgICAhaXNGaW5pdGUoTnVtYmVyKHBvaW50ZXIuZ2VuZXJhdGlvbikpIHx8CiAgICAgICAgICAgICAgICBNYXRoLmZsb29yKE51bWJlcihwb2ludGVyLmdlbmVyYXRpb24pKSAhPT0gTnVtYmVyKHBvaW50ZXIuZ2VuZXJhdGlvbikg";
    encoded = encoded + "fHwKICAgICAgICAgICAgICAgIE51bWJlcihwb2ludGVyLmdlbmVyYXRpb24pIDwgMSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIklOVkFMSURfTE9BRF9SRVZJU0lPTl9OVU1FUklDX0ZJRUxEUyIpOwogICAgICAgIH0KICAgICAgICBsaXZlID0gY2FwdHVyZShpbXAsICJsb2FkX3JldmlzaW9uIik7CiAg";
    encoded = encoded + "ICAgICAgaWYgKGxpdmUuY29udGV4dF9maW5nZXJwcmludF9zaGEyNTYgIT09IFN0cmluZyhyZXN1bHQuc291cmNlX2NvbnRleHRfZmluZ2VycHJpbnRfc2hhMjU2KSB8fAogICAgICAgICAgICAgICAgbGl2ZS5wcm9qZWN0X3VpZCAhPT0gU3RyaW5nKHJlc3VsdC5wcm9qZWN0X3VpZCkgfHwKICAgICAgICAgICAgICAg";
    encoded = encoded + "IGxpdmUuaW1hZ2VfdWlkICE9PSBTdHJpbmcocmVzdWx0LmltYWdlX3VpZCkgfHwKICAgICAgICAgICAgICAgIGxpdmUuYW5hbHlzaXNfc2Vzc2lvbl91aWQgIT09IFN0cmluZyhyZXN1bHQuYW5hbHlzaXNfc2Vzc2lvbl91aWQpIHx8CiAgICAgICAgICAgICAgICBsaXZlLnNvdXJjZV9zaGEyNTYgIT09IFN0cmluZyhy";
    encoded = encoded + "ZXN1bHQuc291cmNlX3NoYTI1NikgfHwKICAgICAgICAgICAgICAgIGxpdmUubWFzdGVyX3BpeGVsX3NoYTI1NiAhPT0gU3RyaW5nKHJlc3VsdC5tYXN0ZXJfcGl4ZWxfc2hhMjU2KSkgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlNUQUxFX0NPTlRFWFRfQ0FOQ0VMTEVEOiBsb2FkX3JldmlzaW9uIik7CiAg";
    encoded = encoded + "ICAgICAgfQogICAgICAgIGlmIChwb2ludGVyLnJlbGF0aXZlX3BhdGggIT09ICJpbWFnZXMvIiArIGxpdmUuaW1hZ2VfaWQgKyAiL2N1cnJlbnRfcmV2aXNpb25fcDEuanNvbiIgfHwKICAgICAgICAgICAgICAgIHJ1bkJpbmRpbmcucmVsYXRpdmVfcGF0aCAhPT0gImltYWdlcy8iICsgbGl2ZS5pbWFnZV9pZCArICIv";
    encoded = encoded + "Y3VycmVudF9ydW4udHN2IikgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIkxPQURfUkVWSVNJT05fUE9JTlRFUl9QQVRIX01JU01BVENIIik7CiAgICAgICAgfQogICAgICAgIHJlcXVpcmVTaGEocmVzdWx0LnNvdXJjZV9jb250ZXh0X2ZpbmdlcnByaW50X3NoYTI1NiwgInNvdXJjZV9jb250ZXh0Iik7CiAg";
    encoded = encoded + "ICAgICAgcmVxdWlyZVNoYShyZXN1bHQucmV2aXNpb25fbWFuaWZlc3Rfc2hhMjU2LCAicmV2aXNpb25fbWFuaWZlc3QiKTsKICAgICAgICByZXF1aXJlU2hhKHJlc3VsdC5yZXZpc2lvbl9tZXRhZGF0YV9zaGEyNTYsICJyZXZpc2lvbl9tZXRhZGF0YSIpOwogICAgICAgIHJlcXVpcmVTaGEocmVzdWx0LnJvaV96aXBf";
    encoded = encoded + "c2hhMjU2LCAicm9pX3ppcCIpOwogICAgICAgIHJlcXVpcmVTaGEocG9pbnRlci5wb2ludGVyX3NoYTI1NiwgImN1cnJlbnRfcmV2aXNpb25fcG9pbnRlciIpOwogICAgICAgIHJlcXVpcmVTaGEocG9pbnRlci5yZXZpc2lvbl9tYW5pZmVzdF9zaGEyNTYsICJjdXJyZW50X3BvaW50ZXJfbWFuaWZlc3QiKTsKICAgICAg";
    encoded = encoded + "ICBpZiAocnVuQmluZGluZy5wb2ludGVyX3NoYTI1Nl9iZWZvcmUgIT09ICJOT1RfQVBQTElDQUJMRSIpIHsKICAgICAgICAgICAgcmVxdWlyZVNoYShydW5CaW5kaW5nLnBvaW50ZXJfc2hhMjU2X2JlZm9yZSwgImN1cnJlbnRfcnVuX3BvaW50ZXIiKTsKICAgICAgICB9CiAgICAgICAgemlwQnl0ZXMgPSBCYXNlNjQu";
    encoded = encoded + "Z2V0RGVjb2RlcigpLmRlY29kZShTdHJpbmcocmVzdWx0LnJvaV96aXBfYmFzZTY0KSk7CiAgICAgICAgaWYgKE51bWJlcihyZXN1bHQucm9pX3ppcF9ieXRlcykgIT09IE51bWJlcih6aXBCeXRlcy5sZW5ndGgpIHx8CiAgICAgICAgICAgICAgICBzaGEyNTZCeXRlcyh6aXBCeXRlcykgIT09IFN0cmluZyhyZXN1bHQu";
    encoded = encoded + "cm9pX3ppcF9zaGEyNTYpKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiTE9BRF9SRVZJU0lPTl9ST0lfQllURVNfTUlTTUFUQ0giKTsKICAgICAgICB9CiAgICAgICAgZGVjb2RlZCA9IGRlY29kZVZlcmlmaWVkUm9pWmlwKHppcEJ5dGVzLCByZXN1bHQucm9pX2NvdW50KTsKICAgICAgICBtYW5hZ2VyID0g";
    encoded = encoded + "Um9pTWFuYWdlci5nZXRJbnN0YW5jZTIoKTsKICAgICAgICBpZiAobWFuYWdlciA9PSBudWxsKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiTE9BRF9SRVZJU0lPTl9ST0lfTUFOQUdFUl9VTkFWQUlMQUJMRSIpOwogICAgICAgIH0KICAgICAgICBvbGRSb2lzID0gbWFuYWdlci5nZXRSb2lzQXNBcnJheSgp";
    encoded = encoded + "OwogICAgICAgIG9sZFNlbGVjdGVkID0gbWFuYWdlci5nZXRTZWxlY3RlZEluZGV4KCk7CiAgICAgICAgb2xkQWN0aXZlID0gaW1wLmdldFJvaSgpID09IG51bGwgPyBudWxsIDogaW1wLmdldFJvaSgpLmNsb25lKCk7CiAgICAgICAgZm9yIChpID0gMDsgaSA8IG9sZFJvaXMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAg";
    encoded = encoded + "ICAgICAgb2xkQ2xvbmVzLnB1c2gob2xkUm9pc1tpXS5jbG9uZSgpKTsKICAgICAgICB9CiAgICAgICAgZm9yIChpID0gMDsgaSA8IHByb3BlcnR5S2V5cy5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICBvbGRQcm9wZXJ0aWVzLnB1c2goaW1wLmdldFByb3BlcnR5KHByb3BlcnR5S2V5c1tpXSkpOwogICAgICAg";
    encoded = encoded + "IH0KICAgICAgICB0cnkgewogICAgICAgICAgICBtYW5hZ2VyLnJlc2V0KCk7CiAgICAgICAgICAgIG11dGF0ZWQgPSB0cnVlOwogICAgICAgICAgICBmb3IgKGkgPSAwOyBpIDwgZGVjb2RlZC5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICAgICAgZGVjb2RlZFtpXS5zZXRQcm9wZXJ0eSgiV29ya2luZ19zdGF0";
    encoded = encoded + "ZV9pZCIsIFN0cmluZyh3b3JraW5nLndvcmtpbmdfc3RhdGVfaWQpKTsKICAgICAgICAgICAgICAgIGRlY29kZWRbaV0uc2V0UHJvcGVydHkoIlJldmlzaW9uX2lkIiwgIk5PVF9BUFBMSUNBQkxFIik7CiAgICAgICAgICAgICAgICBkZWNvZGVkW2ldLnNldFByb3BlcnR5KCJSZXZpc2lvbl91aWQiLCAiTk9UX0FQUExJ";
    encoded = encoded + "Q0FCTEUiKTsKICAgICAgICAgICAgICAgIGRlY29kZWRbaV0uc2V0UHJvcGVydHkoIlBhcmVudF9yZXZpc2lvbl9pZCIsIFN0cmluZyhyZXN1bHQucmV2aXNpb25faWQpKTsKICAgICAgICAgICAgICAgIGRlY29kZWRbaV0uc2V0UHJvcGVydHkoIlBhcmVudF9yZXZpc2lvbl91aWQiLCBTdHJpbmcocmVzdWx0LnJldmlz";
    encoded = encoded + "aW9uX3VpZCkpOwogICAgICAgICAgICAgICAgbWFuYWdlci5hZGRSb2koZGVjb2RlZFtpXSk7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgaWYgKG1hbmFnZXIuZ2V0Q291bnQoKSAhPT0gZGVjb2RlZC5sZW5ndGgpIHsKICAgICAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiTE9BRF9SRVZJU0lPTl9ST0lfTUFO";
    encoded = encoded + "QUdFUl9DT1VOVF9NSVNNQVRDSCIpOwogICAgICAgICAgICB9CiAgICAgICAgICAgIGlmIChkZWNvZGVkLmxlbmd0aCA+IDApIHsKICAgICAgICAgICAgICAgIG1hbmFnZXIuc2VsZWN0KGltcCwgMCk7CiAgICAgICAgICAgICAgICBpbXAuc2V0Um9pKG1hbmFnZXIuZ2V0Um9pKDApKTsKICAgICAgICAgICAgfSBlbHNl";
    encoded = encoded + "IHsKICAgICAgICAgICAgICAgIGltcC5raWxsUm9pKCk7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgcHV0KCJDVEwuUDEucmV2aXNpb25faWQiLCAiTk9UX0FQUExJQ0FCTEUiKTsKICAgICAgICAgICAgcHV0KCJDVEwuUDEucmV2aXNpb25fdWlkIiwgIk5PVF9BUFBMSUNBQkxFIik7CiAgICAgICAgICAgIHB1dCgi";
    encoded = encoded + "Q1RMLlAxLndvcmtpbmdfc3RhdGVfaWQiLCB3b3JraW5nLndvcmtpbmdfc3RhdGVfaWQpOwogICAgICAgICAgICBwdXQoIkNUTC5QMS5wYXJlbnRfcmV2aXNpb25faWQiLCByZXN1bHQucmV2aXNpb25faWQpOwogICAgICAgICAgICBwdXQoIkNUTC5QMS5wYXJlbnRfcmV2aXNpb25fdWlkIiwgcmVzdWx0LnJldmlzaW9u";
    encoded = encoded + "X3VpZCk7CiAgICAgICAgICAgIHB1dCgiQ1RMLlAxLmJhc2VfcmV2aXNpb25fbWFuaWZlc3Rfc2hhMjU2IiwgcmVzdWx0LnJldmlzaW9uX21hbmlmZXN0X3NoYTI1Nik7CiAgICAgICAgICAgIHB1dCgiQ1RMLlAxLmJhc2VfcmV2aXNpb25fcm9pX3ppcF9zaGEyNTYiLCByZXN1bHQucm9pX3ppcF9zaGEyNTYpOwogICAg";
    encoded = encoded + "ICAgICAgICBwdXQoIkNUTC5QMS5sb2FkZWRfcmV2aXNpb25fbWV0YWRhdGFfc2hhMjU2IiwgcmVzdWx0LnJldmlzaW9uX21ldGFkYXRhX3NoYTI1Nik7CiAgICAgICAgICAgIHB1dCgiQ1RMLlAxLmxvYWRlZF9yZXZpc2lvbl9wb2ludGVyX3NoYTI1NiIsIHBvaW50ZXIucG9pbnRlcl9zaGEyNTYpOwogICAgICAgICAg";
    encoded = encoded + "ICBwdXQoIkNUTC5QMS5sb2FkZWRfcmV2aXNpb25fc2VsZWN0ZWRfaXNfY3VycmVudCIsIFN0cmluZyhyZXN1bHQuc2VsZWN0ZWRfaXNfY3VycmVudCkpOwogICAgICAgICAgICBwdXQoIkNUTC5QMS5jdXJyZW50X3J1bl9pZCIsICJOT1RfQVBQTElDQUJMRSIpOwogICAgICAgICAgICBwdXQoIkNUTC5QMS5jdXJyZW50";
    encoded = encoded + "X3J1bl91aWQiLCAiTk9UX0FQUExJQ0FCTEUiKTsKICAgICAgICAgICAgcHV0KCJDVEwuUDEuY3VycmVudF9ydW5fbWFuaWZlc3Rfc2hhMjU2IiwgIk5PVF9BUFBMSUNBQkxFIik7CiAgICAgICAgICAgIHB1dCgiQ1RMLlAxLmN1cnJlbnRfcnVuX2JpbmRpbmdfc3RhdHVzIiwgcnVuQmluZGluZy5hY3Rpb24pOwogICAg";
    encoded = encoded + "ICAgICAgICBwdXQoIkNUTC5QMS5jdXJyZW50X3J1bl9wb2ludGVyX3NoYTI1Nl9iZWZvcmUiLCBydW5CaW5kaW5nLnBvaW50ZXJfc2hhMjU2X2JlZm9yZSk7CiAgICAgICAgICAgIGJ1bXBDb3VudGVyKGltcCwgIkNUTC5QMS5zZWxlY3Rpb25fcmV2aXNpb24iKTsKICAgICAgICAgICAgYnVtcENvdW50ZXIoaW1wLCAi";
    encoded = encoded + "Q1RMLlAxLmdlbmVyYXRpb25fdG9rZW4iKTsKICAgICAgICAgICAgcHV0KCJDVEwuUDEubGFzdF9ldmVudCIsICJSRVZJU0lPTl9MT0FERURfVE9fV09SS0lOR19TVEFURSIpOwogICAgICAgICAgICBwdXQoIkNUTC5QMS5sYXN0X2V2ZW50X2RldGFpbCIsIHJlc3VsdC5yZXZpc2lvbl9pZCArICJ8IiArIHJlc3VsdC5y";
    encoded = encoded + "ZXZpc2lvbl9tYW5pZmVzdF9zaGEyNTYpOwogICAgICAgICAgICBwdXQoIkNUTC5QMS5sYXN0X2V2ZW50X211dGF0aW9ucyIsICJJTl9NRU1PUllfUk9JX01BTkFHRVJfT05MWSIpOwogICAgICAgICAgICBwdXQoIkNUTC5QMS5sYXN0X2V2ZW50X3JvaV9tYW5hZ2VyX2NoYW5nZXMiLCBTdHJpbmcoZGVjb2RlZC5sZW5n";
    encoded = encoded + "dGgpKTsKICAgICAgICAgICAgcHV0KCJDVEwuUDEubGFzdF9ldmVudF9kaXNrX3dyaXRlcyIsICIwIik7CiAgICAgICAgICAgIGltcC51cGRhdGVBbmREcmF3KCk7CiAgICAgICAgICAgIHJldHVybiB7CiAgICAgICAgICAgICAgICBzdGF0dXM6ICJSRVZJU0lPTl9MT0FERURfVE9fV09SS0lOR19TVEFURSIsCiAgICAg";
    encoded = encoded + "ICAgICAgICAgICB3b3JraW5nX3N0YXRlX2lkOiBTdHJpbmcod29ya2luZy53b3JraW5nX3N0YXRlX2lkKSwKICAgICAgICAgICAgICAgIHJldmlzaW9uX2lkOiBTdHJpbmcocmVzdWx0LnJldmlzaW9uX2lkKSwKICAgICAgICAgICAgICAgIHJldmlzaW9uX3VpZDogU3RyaW5nKHJlc3VsdC5yZXZpc2lvbl91aWQpLAog";
    encoded = encoded + "ICAgICAgICAgICAgICAgcmV2aXNpb25fbWFuaWZlc3Rfc2hhMjU2OiBTdHJpbmcocmVzdWx0LnJldmlzaW9uX21hbmlmZXN0X3NoYTI1NiksCiAgICAgICAgICAgICAgICBzZWxlY3RlZF9pc19jdXJyZW50OiBCb29sZWFuKHJlc3VsdC5zZWxlY3RlZF9pc19jdXJyZW50KSwKICAgICAgICAgICAgICAgIHJvaV9jb3Vu";
    encoded = encoded + "dDogTnVtYmVyKGRlY29kZWQubGVuZ3RoKSwKICAgICAgICAgICAgICAgIGN1cnJlbnRfcnVuX2JpbmRpbmdfc3RhdHVzOiBTdHJpbmcocnVuQmluZGluZy5hY3Rpb24pCiAgICAgICAgICAgIH07CiAgICAgICAgfSBjYXRjaCAoZXJyb3IpIHsKICAgICAgICAgICAgaWYgKG11dGF0ZWQpIHsKICAgICAgICAgICAgICAg";
    encoded = encoded + "IG1hbmFnZXIucmVzZXQoKTsKICAgICAgICAgICAgICAgIGZvciAoaSA9IDA7IGkgPCBvbGRDbG9uZXMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgICAgICAgICBtYW5hZ2VyLmFkZFJvaShvbGRDbG9uZXNbaV0pOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgaWYgKG9sZFNlbGVjdGVkID49";
    encoded = encoded + "IDAgJiYgb2xkU2VsZWN0ZWQgPCBtYW5hZ2VyLmdldENvdW50KCkpIHsKICAgICAgICAgICAgICAgICAgICBtYW5hZ2VyLnNlbGVjdChpbXAsIG9sZFNlbGVjdGVkKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGlmIChvbGRBY3RpdmUgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgICAgIGltcC5z";
    encoded = encoded + "ZXRSb2kob2xkQWN0aXZlKTsKICAgICAgICAgICAgICAgIH0gZWxzZSB7CiAgICAgICAgICAgICAgICAgICAgaW1wLmtpbGxSb2koKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGZvciAoaSA9IDA7IGkgPCBwcm9wZXJ0eUtleXMubGVuZ3RoOyBpICs9IDEpIHsKICAgICAgICAgICAgICAgICAgICBp";
    encoded = encoded + "bXAuc2V0UHJvcGVydHkocHJvcGVydHlLZXlzW2ldLCBvbGRQcm9wZXJ0aWVzW2ldKTsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGltcC51cGRhdGVBbmREcmF3KCk7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgdGhyb3cgZXJyb3I7CiAgICAgICAgfQogICAgfQoKICAgIGZ1bmN0aW9uIG9wZXJh";
    encoded = encoded + "dGlvblNuYXBzaG90KGltcCwgcGFyYW1ldGVycywgb3BlcmF0aW9uKSB7CiAgICAgICAgdmFyIG1hbmFnZXIgPSBSb2lNYW5hZ2VyLmdldEluc3RhbmNlMigpOwogICAgICAgIHZhciByb2lzID0gbWFuYWdlciA9PSBudWxsID8gW10gOiBtYW5hZ2VyLmdldFJvaXNBc0FycmF5KCk7CiAgICAgICAgdmFyIHJlY29yZHMg";
    encoded = encoded + "PSBbXTsKICAgICAgICB2YXIgemlwQnl0ZXNPdXQgPSBuZXcgQnl0ZUFycmF5T3V0cHV0U3RyZWFtKCk7CiAgICAgICAgdmFyIHppcCA9IG5ldyBaaXBPdXRwdXRTdHJlYW0oemlwQnl0ZXNPdXQpOwogICAgICAgIHZhciBpOwogICAgICAgIHZhciByb2k7CiAgICAgICAgdmFyIHJvaUJ5dGVzOwogICAgICAgIHZhciBl";
    encoded = encoded + "bnRyeTsKICAgICAgICB2YXIgYm91bmRzOwogICAgICAgIHZhciBwb2x5Z29uOwogICAgICAgIHZhciB4czsKICAgICAgICB2YXIgeXM7CiAgICAgICAgdmFyIGo7CiAgICAgICAgdmFyIHByb3BlcnRpZXNUZXh0OwogICAgICAgIHZhciBncm91cDsKICAgICAgICB2YXIgemlwQnl0ZXM7CiAgICAgICAgdmFyIGltYWdl";
    encoded = encoded + "OwogICAgICAgIHZhciBzdGF0ZTsKICAgICAgICB2YXIgc25hcHNob3Q7CiAgICAgICAgb3BlcmF0aW9uID0gU3RyaW5nKG9wZXJhdGlvbik7CiAgICAgICAgaWYgKG9wZXJhdGlvbiA9PT0gImxvYWRfcmV2aXNpb24iKSB7CiAgICAgICAgICAgIHJldHVybiB7CiAgICAgICAgICAgICAgICBsb2FkX3NjaGVtYTogIkNU";
    encoded = encoded + "TF9QMV9MT0FEX1JFVklTSU9OX1JFUVVFU1RfVjEiLAogICAgICAgICAgICAgICAgcmV2aXNpb25fcmVsYXRpdmVfcGF0aDogU3RyaW5nKHBhcmFtZXRlcnMubG9hZF9yZXZpc2lvbl9yZWxhdGl2ZV9wYXRoKSwKICAgICAgICAgICAgICAgIGN1cnJlbnRfcmV2aXNpb25fcG9pbnRlcl9yZWxhdGl2ZV9wYXRoOiBTdHJp";
    encoded = encoded + "bmcocGFyYW1ldGVycy5jdXJyZW50X3JldmlzaW9uX3BvaW50ZXJfcmVsYXRpdmVfcGF0aCksCiAgICAgICAgICAgICAgICBjdXJyZW50X3J1bl9wb2ludGVyX3JlbGF0aXZlX3BhdGg6IFN0cmluZyhwYXJhbWV0ZXJzLmN1cnJlbnRfcnVuX3BvaW50ZXJfcmVsYXRpdmVfcGF0aCksCiAgICAgICAgICAgICAgICB3b3Jr";
    encoded = encoded + "aW5nX3N0YXRlX2lkOiBTdHJpbmcocGFyYW1ldGVycy5sb2FkX3dvcmtpbmdfc3RhdGVfaWQpCiAgICAgICAgICAgIH07CiAgICAgICAgfQogICAgICAgIGlmIChvcGVyYXRpb24gPT09ICJjb21iaW5lZF9hbmFseXNpcyIpIHsKICAgICAgICAgICAgcmV0dXJuIHsKICAgICAgICAgICAgICAgIHNlbGVjdGVkX2ltYWdl";
    encoded = encoded + "X2lkczogcGFyYW1ldGVycy5zZWxlY3RlZF9pbWFnZV9pZHMsCiAgICAgICAgICAgICAgICBjdXJyZW50X3J1bl9wb2ludGVyX3JlbGF0aXZlX3BhdGhzOiBwYXJhbWV0ZXJzLmN1cnJlbnRfcnVuX3BvaW50ZXJfcmVsYXRpdmVfcGF0aHMsCiAgICAgICAgICAgICAgICBjb21iaW5lZF9ydW5zX3JlbGF0aXZlX3BhdGg6";
    encoded = encoded + "IHBhcmFtZXRlcnMuY29tYmluZWRfcnVuc19yZWxhdGl2ZV9wYXRoLAogICAgICAgICAgICAgICAgaGlzdG9ncmFtX2Jpbl9ubTogTnVtYmVyKHBhcmFtZXRlcnMuYW5hbHlzaXNfcGFyYW1ldGVycy5oaXN0b2dyYW1fYmluX25tKSwKICAgICAgICAgICAgICAgIGZlYXR1cmVfZGlzdGFuY2VfYmluX25tOiBOdW1iZXIo";
    encoded = encoded + "cGFyYW1ldGVycy5hbmFseXNpc19wYXJhbWV0ZXJzLmZlYXR1cmVfZGlzdGFuY2VfYmluX25tKQogICAgICAgICAgICB9OwogICAgICAgIH0KICAgICAgICB0cnkgewogICAgICAgICAgICBmb3IgKGkgPSAwOyBpIDwgcm9pcy5sZW5ndGg7IGkgKz0gMSkgewogICAgICAgICAgICAgICAgcm9pID0gcm9pc1tpXTsKICAg";
    encoded = encoded + "ICAgICAgICAgICAgIHJvaUJ5dGVzID0gUm9pRW5jb2Rlci5zYXZlQXNCeXRlQXJyYXkocm9pKTsKICAgICAgICAgICAgICAgIGlmIChyb2lCeXRlcyA9PSBudWxsIHx8IHJvaUJ5dGVzLmxlbmd0aCA8IDY0KSB7CiAgICAgICAgICAgICAgICAgICAgdGhyb3cgbmV3IEVycm9yKCJST0lfU0VSSUFMSVpBVElPTl9GQUlM";
    encoded = encoded + "RUQ6IiArIGkpOwogICAgICAgICAgICAgICAgfQogICAgICAgICAgICAgICAgZW50cnkgPSBuZXcgWmlwRW50cnkoIlJPSV8iICsgKCIwMDAwMDAiICsgKGkgKyAxKSkuc2xpY2UoLTYpICsgIi5yb2kiKTsKICAgICAgICAgICAgICAgIGVudHJ5LnNldFRpbWUoMCk7CiAgICAgICAgICAgICAgICB6aXAucHV0TmV4dEVu";
    encoded = encoded + "dHJ5KGVudHJ5KTsKICAgICAgICAgICAgICAgIHppcC53cml0ZShyb2lCeXRlcywgMCwgcm9pQnl0ZXMubGVuZ3RoKTsKICAgICAgICAgICAgICAgIHppcC5jbG9zZUVudHJ5KCk7CiAgICAgICAgICAgICAgICBib3VuZHMgPSByb2kuZ2V0RmxvYXRCb3VuZHMoKTsKICAgICAgICAgICAgICAgIHBvbHlnb24gPSByb2ku";
    encoded = encoded + "Z2V0RmxvYXRQb2x5Z29uKCk7CiAgICAgICAgICAgICAgICB4cyA9IFtdOwogICAgICAgICAgICAgICAgeXMgPSBbXTsKICAgICAgICAgICAgICAgIGlmIChwb2x5Z29uICE9IG51bGwpIHsKICAgICAgICAgICAgICAgICAgICBmb3IgKGogPSAwOyBqIDwgcG9seWdvbi5ucG9pbnRzOyBqICs9IDEpIHsKICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgICAgICAgeHMucHVzaChOdW1iZXIocG9seWdvbi54cG9pbnRzW2pdKSk7CiAgICAgICAgICAgICAgICAgICAgICAgIHlzLnB1c2goTnVtYmVyKHBvbHlnb24ueXBvaW50c1tqXSkpOwogICAgICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIHByb3BlcnRpZXNU";
    encoded = encoded + "ZXh0ID0gcm9pLmdldFByb3BlcnRpZXMoKTsKICAgICAgICAgICAgICAgIGlmIChwcm9wZXJ0aWVzVGV4dCA9PSBudWxsKSB7CiAgICAgICAgICAgICAgICAgICAgcHJvcGVydGllc1RleHQgPSAiIjsKICAgICAgICAgICAgICAgIH0KICAgICAgICAgICAgICAgIGdyb3VwID0gMDsKICAgICAgICAgICAgICAgIHRyeSB7";
    encoded = encoded + "CiAgICAgICAgICAgICAgICAgICAgZ3JvdXAgPSBOdW1iZXIocm9pLmdldEdyb3VwKCkpOwogICAgICAgICAgICAgICAgfSBjYXRjaCAoaWdub3JlZEdyb3VwKSB7fQogICAgICAgICAgICAgICAgcmVjb3Jkcy5wdXNoKHsKICAgICAgICAgICAgICAgICAgICBpbmRleDogaSwKICAgICAgICAgICAgICAgICAgICAvLyBU";
    encoded = encoded + "aGUgZXhhY3QgYnJva2VyIGNvbnRyYWN0IGJpbmRzIHRoaXMgZmllbGQgdG8gdGhlIFpJUAogICAgICAgICAgICAgICAgICAgIC8vIG1lbWJlciBuYW1lOyB0aGUgbG9naWNhbCBJbWFnZUogUk9JIG5hbWUgcmVtYWlucyBpbiB0aGUKICAgICAgICAgICAgICAgICAgICAvLyBzZXJpYWxpemVkIFJPSSBieXRlcyBhbmQg";
    encoded = encoded + "aXRzIHByb3BlcnRpZXMuCiAgICAgICAgICAgICAgICAgICAgbmFtZTogU3RyaW5nKGVudHJ5LmdldE5hbWUoKSksCiAgICAgICAgICAgICAgICAgICAgaW1hZ2VqX3JvaV90eXBlOiBTdHJpbmcocm9pLmdldFR5cGVBc1N0cmluZygpKSwKICAgICAgICAgICAgICAgICAgICBncm91cDogZ3JvdXAsCiAgICAgICAgICAg";
    encoded = encoded + "ICAgICAgICAgcHJvcGVydGllc190ZXh0OiBTdHJpbmcocHJvcGVydGllc1RleHQpLAogICAgICAgICAgICAgICAgICAgIHByb3BlcnRpZXNfc2hhMjU2OiBzaGEyNTZUZXh0KFN0cmluZyhwcm9wZXJ0aWVzVGV4dCkpLAogICAgICAgICAgICAgICAgICAgIHNlcmlhbGl6ZWRfcm9pX3NoYTI1Njogc2hhMjU2Qnl0ZXMo";
    encoded = encoded + "cm9pQnl0ZXMpLAogICAgICAgICAgICAgICAgICAgIGJvdW5kczogewogICAgICAgICAgICAgICAgICAgICAgICB4X3B4OiBOdW1iZXIoYm91bmRzLmdldFgoKSksCiAgICAgICAgICAgICAgICAgICAgICAgIHlfcHg6IE51bWJlcihib3VuZHMuZ2V0WSgpKSwKICAgICAgICAgICAgICAgICAgICAgICAgd2lkdGhfcHg6";
    encoded = encoded + "IE51bWJlcihib3VuZHMuZ2V0V2lkdGgoKSksCiAgICAgICAgICAgICAgICAgICAgICAgIGhlaWdodF9weDogTnVtYmVyKGJvdW5kcy5nZXRIZWlnaHQoKSkKICAgICAgICAgICAgICAgICAgICB9LAogICAgICAgICAgICAgICAgICAgIGNvb3JkaW5hdGVzOiB7eF9weDogeHMsIHlfcHg6IHlzfQogICAgICAgICAgICAg";
    encoded = encoded + "ICAgfSk7CiAgICAgICAgICAgIH0KICAgICAgICAgICAgemlwLmZpbmlzaCgpOwogICAgICAgICAgICB6aXAuY2xvc2UoKTsKICAgICAgICAgICAgemlwID0gbnVsbDsKICAgICAgICAgICAgemlwQnl0ZXMgPSB6aXBCeXRlc091dC50b0J5dGVBcnJheSgpOwogICAgICAgIH0gZmluYWxseSB7CiAgICAgICAgICAgIGlm";
    encoded = encoded + "ICh6aXAgIT0gbnVsbCkgewogICAgICAgICAgICAgICAgdHJ5IHsKICAgICAgICAgICAgICAgICAgICB6aXAuY2xvc2UoKTsKICAgICAgICAgICAgICAgIH0gY2F0Y2ggKGlnbm9yZWRaaXApIHt9CiAgICAgICAgICAgIH0KICAgICAgICB9CiAgICAgICAgaW1hZ2UgPSB7CiAgICAgICAgICAgIHdpZHRoX3B4OiBOdW1i";
    encoded = encoded + "ZXIoaW1wLmdldFdpZHRoKCkpLAogICAgICAgICAgICBoZWlnaHRfcHg6IE51bWJlcihpbXAuZ2V0SGVpZ2h0KCkpLAogICAgICAgICAgICBiaXRfZGVwdGg6IE51bWJlcihpbXAuZ2V0Qml0RGVwdGgoKSksCiAgICAgICAgICAgIGltYWdlX3JvbGU6IGltYWdlUHJvcGVydHkoaW1wLCAiQ1RMLlAxLmltYWdlX3JvbGUi";
    encoded = encoded + "LCAiTUFTVEVSX1JFQURfT05MWSIpLAogICAgICAgICAgICBzb3VyY2VfaGFzaF9zdGF0dXM6IGltYWdlUHJvcGVydHkoaW1wLCAiQ1RMLlAxLnNvdXJjZV9oYXNoX3N0YXR1cyIsICJOT1RfVkVSSUZJRUQiKSwKICAgICAgICAgICAgbWFzdGVyX3BpeGVsX2hhc2hfc3RhdHVzOiBpbWFnZVByb3BlcnR5KGltcCwgIkNU";
    encoded = encoded + "TC5QMS5tYXN0ZXJfcGl4ZWxfaGFzaF9zdGF0dXMiLCAiTk9UX1ZFUklGSUVEIiksCiAgICAgICAgICAgIG1hc3Rlcl9waXhlbF9oYXNoX21ldGhvZDogaW1hZ2VQcm9wZXJ0eShpbXAsICJDVEwuUDEubWFzdGVyX3BpeGVsX2hhc2hfbWV0aG9kIiwgUElYRUxfSEFTSF9NRVRIT0QpLAogICAgICAgICAgICBzY2FsZV94";
    encoded = encoded + "X25tX3B4OiBOdW1iZXIocGFyYW1ldGVycy5zY2FsZV94X25tX3B4KSwKICAgICAgICAgICAgc2NhbGVfeV9ubV9weDogTnVtYmVyKHBhcmFtZXRlcnMuc2NhbGVfeV9ubV9weCksCiAgICAgICAgICAgIHNjYWxlX21ldGhvZDogU3RyaW5nKHBhcmFtZXRlcnMuc2NhbGVfbWV0aG9kKQogICAgICAgIH07CiAgICAgICAg";
    encoded = encoded + "aWYgKCEoaW1hZ2Uuc2NhbGVfeF9ubV9weCA+IDAgJiYgaW1hZ2Uuc2NhbGVfeV9ubV9weCA+IDApKSB7CiAgICAgICAgICAgIHRocm93IG5ldyBFcnJvcigiSU5WQUxJRF9TQ0FMRV9YWSIpOwogICAgICAgIH0KICAgICAgICBzdGF0ZSA9IHsKICAgICAgICAgICAgcGFyZW50X3JldmlzaW9uX2lkOiBpbWFnZVByb3Bl";
    encoded = encoded + "cnR5KAogICAgICAgICAgICAgICAgaW1wLAogICAgICAgICAgICAgICAgIkNUTC5QMS5wYXJlbnRfcmV2aXNpb25faWQiLAogICAgICAgICAgICAgICAgaW1hZ2VQcm9wZXJ0eShpbXAsICJDVEwuUDEucmV2aXNpb25faWQiLCAiTk9UX0FQUExJQ0FCTEUiKQogICAgICAgICAgICApLAogICAgICAgICAgICBwYXJlbnRf";
    encoded = encoded + "cmV2aXNpb25fdWlkOiBpbWFnZVByb3BlcnR5KAogICAgICAgICAgICAgICAgaW1wLAogICAgICAgICAgICAgICAgIkNUTC5QMS5wYXJlbnRfcmV2aXNpb25fdWlkIiwKICAgICAgICAgICAgICAgIGltYWdlUHJvcGVydHkoaW1wLCAiQ1RMLlAxLnJldmlzaW9uX3VpZCIsICJOT1RfQVBQTElDQUJMRSIpCiAgICAgICAg";
    encoded = encoded + "ICAgICksCiAgICAgICAgICAgIHdvcmtpbmdfc3RhdGVfaWQ6IGltYWdlUHJvcGVydHkoaW1wLCAiQ1RMLlAxLndvcmtpbmdfc3RhdGVfaWQiLCAiTk9UX0FQUExJQ0FCTEUiKQogICAgICAgIH07CiAgICAgICAgc25hcHNob3QgPSB7CiAgICAgICAgICAgIHNuYXBzaG90X3NjaGVtYTogIkNUTF9GSUpJX09QRVJBVElP";
    encoded = encoded + "Tl9TTkFQU0hPVF9WMSIsCiAgICAgICAgICAgIGltYWdlOiBpbWFnZSwKICAgICAgICAgICAgcm9pX3NuYXBzaG90OiB7CiAgICAgICAgICAgICAgICBlbmNvZGluZzogIklNQUdFSl9ST0lfWklQX0JBU0U2NF9WMSIsCiAgICAgICAgICAgICAgICBieXRlczogTnVtYmVyKHppcEJ5dGVzLmxlbmd0aCksCiAgICAgICAg";
    encoded = encoded + "ICAgICAgICBzaGEyNTY6IHNoYTI1NkJ5dGVzKHppcEJ5dGVzKSwKICAgICAgICAgICAgICAgIGJhc2U2NDogU3RyaW5nKEJhc2U2NC5nZXRFbmNvZGVyKCkuZW5jb2RlVG9TdHJpbmcoemlwQnl0ZXMpKSwKICAgICAgICAgICAgICAgIHJvaV9jb3VudDogTnVtYmVyKHJvaXMubGVuZ3RoKQogICAgICAgICAgICB9LAog";
    encoded = encoded + "ICAgICAgICAgICByb2lfcmVjb3JkczogcmVjb3JkcywKICAgICAgICAgICAgc3RhdGU6IHN0YXRlLAogICAgICAgICAgICBhbmFseXNpc19wYXJhbWV0ZXJzOiBwYXJhbWV0ZXJzLmFuYWx5c2lzX3BhcmFtZXRlcnMKICAgICAgICB9OwogICAgICAgIGlmIChvcGVyYXRpb24gPT09ICJzYXZlX3JldmlzaW9uIikgewog";
    encoded = encoded + "ICAgICAgICAgICBzbmFwc2hvdC5yZXZpc2lvbnNfcmVsYXRpdmVfcGF0aCA9IHBhcmFtZXRlcnMucmV2aXNpb25zX3JlbGF0aXZlX3BhdGg7CiAgICAgICAgfSBlbHNlIGlmIChvcGVyYXRpb24gPT09ICJleHBvcnRfcnVuIikgewogICAgICAgICAgICBzbmFwc2hvdC5jdXJyZW50X3J1bl9wb2ludGVyX3JlbGF0aXZl";
    encoded = encoded + "X3BhdGggPSBwYXJhbWV0ZXJzLmN1cnJlbnRfcnVuX3BvaW50ZXJfcmVsYXRpdmVfcGF0aDsKICAgICAgICAgICAgc25hcHNob3QucnVuX3JlZ2lzdHJ5X3JlbGF0aXZlX3BhdGggPSBwYXJhbWV0ZXJzLnJ1bl9yZWdpc3RyeV9yZWxhdGl2ZV9wYXRoOwogICAgICAgICAgICBzbmFwc2hvdC5ydW5zX3JlbGF0aXZlX3Bh";
    encoded = encoded + "dGggPSBwYXJhbWV0ZXJzLnJ1bnNfcmVsYXRpdmVfcGF0aDsKICAgICAgICB9IGVsc2UgaWYgKG9wZXJhdGlvbiAhPT0gInZhbGlkYXRlIikgewogICAgICAgICAgICB0aHJvdyBuZXcgRXJyb3IoIlVOU1VQUE9SVEVEX0JSSURHRV9PUEVSQVRJT046IiArIG9wZXJhdGlvbik7CiAgICAgICAgfQogICAgICAgIHJldHVy";
    encoded = encoded + "biBzbmFwc2hvdDsKICAgIH0KCiAgICB2YXIgYXBpID0gewogICAgICAgIHZlcnNpb246IFZFUlNJT04sCiAgICAgICAgYnVpbGRJZGVudGl0eTogQlVJTERfSURFTlRJVFksCiAgICAgICAgdGVsZW1ldHJ5U2NoZW1hOiBURUxFTUVUUllfU0NIRU1BLAogICAgICAgIHRlbGVtZXRyeUNvbmZpZ3VyZTogdGVsZW1ldHJ5";
    encoded = encoded + "Q29uZmlndXJlLAogICAgICAgIHRlbGVtZXRyeVNuYXBzaG90OiB0ZWxlbWV0cnlTbmFwc2hvdCwKICAgICAgICB0ZWxlbWV0cnlFdmVudDogdGVsZW1ldHJ5UmVjb3JkLAogICAgICAgIHRlbGVtZXRyeUJsb2NrZWQ6IHRlbGVtZXRyeUJsb2NrZWQsCiAgICAgICAgdGVsZW1ldHJ5T3BlcmF0aW9uOiB0ZWxlbWV0cnlP";
    encoded = encoded + "cGVyYXRpb24sCiAgICAgICAgdGVsZW1ldHJ5SWQ6IHRlbGVtZXRyeUlkLAogICAgICAgIGF3YWl0RXZ0MDA2UHJlcGFyZVN3aXRjaDogYXdhaXRFdnQwMDZQcmVwYXJlU3dpdGNoLAogICAgICAgIHBpeGVsSGFzaE1ldGhvZDogUElYRUxfSEFTSF9NRVRIT0QsCiAgICAgICAgY2FwdHVyZTogY2FwdHVyZSwKICAgICAg";
    encoded = encoded + "ICBzYW1lQ29udGV4dDogc2FtZUNvbnRleHQsCiAgICAgICAgc3VibWl0OiBzdWJtaXQsCiAgICAgICAgaW5zdGFsbDogaW5zdGFsbCwKICAgICAgICB0ZWFyZG93bjogdGVhcmRvd24sCiAgICAgICAgcHJlcGFyZUltYWdlU3dpdGNoOiBwcmVwYXJlSW1hZ2VTd2l0Y2gsCiAgICAgICAgY2FuY2VsSW1hZ2VTd2l0Y2g6";
    encoded = encoded + "IGNhbmNlbEltYWdlU3dpdGNoLAogICAgICAgIGNvbW1pdEltYWdlU3dpdGNoOiBjb21taXRJbWFnZVN3aXRjaCwKICAgICAgICBub3JtYWxpemVkUGl4ZWxIYXNoOiBub3JtYWxpemVkUGl4ZWxIYXNoLAogICAgICAgIHZlcmlmeU1hc3RlcjogdmVyaWZ5TWFzdGVyLAogICAgICAgIGRlcml2ZUxlZ2FjeUltYWdlSWRl";
    encoded = encoded + "bnRpdHk6IGRlcml2ZUxlZ2FjeUltYWdlSWRlbnRpdHksCiAgICAgICAgYXBwbHlWZXJpZmllZFJldmlzaW9uTG9hZDogYXBwbHlWZXJpZmllZFJldmlzaW9uTG9hZCwKICAgICAgICBvcGVyYXRpb25TbmFwc2hvdDogb3BlcmF0aW9uU25hcHNob3QsCiAgICAgICAgc2NpZW50aWZpY1dyaXRlQWxsb3dlZDogc2NpZW50";
    encoded = encoded + "aWZpY1dyaXRlQWxsb3dlZCwKICAgICAgICBhdWRpdFN0YWxlOiBhdWRpdFN0YWxlCiAgICB9OwogICAgcmVnaXN0cnlQdXQoUlVOVElNRV9LRVksIGFwaSk7CiAgICByZXR1cm4gYXBpOwp9KCkpOwo=";
    return encoded;
}


function p1EnsureRuntime() {
    b64 = p1EmbeddedRuntimeBase64();
    code = "(function(){var IJ=Packages.ij.IJ,current=IJ.getProperty('CTL.P1.Runtime'),B=Packages.java.util.Base64,CS=Packages.java.nio.charset.StandardCharsets,MD=Packages.java.security.MessageDigest;";
    code = code + "function hex(a){var s='',v;for(var i=0;i<a.length;i++){v=a[i];if(v<0)v+=256;if(v<16)s+='0';s+=v.toString(16);}return s;}";
    code = code + "try{if(current!=null&&String(current.version)=='" + p1RuntimeVersion + "'&&String(current.buildIdentity)=='" + p1RuntimeBuildIdentity + "'&&String(current.telemetrySchema)=='CTL_P1_RUNTIME_TELEMETRY_V1'&&typeof current.telemetryConfigure=='function'&&typeof current.telemetrySnapshot=='function'&&typeof current.telemetryEvent=='function'&&typeof current.telemetryBlocked=='function'&&typeof current.awaitEvt006PrepareSwitch=='function')return 'OK|'+String(current.version)+'|'+String(current.buildIdentity);var bytes=B.getDecoder().decode('" + b64 + "'),actual=hex(MD.getInstance('SHA-256').digest(bytes));";
    code = code + "if(actual!='" + p1EmbeddedRuntimeSourceSha256 + "')return 'ERROR|EMBEDDED_RUNTIME_SHA256_MISMATCH|'+actual;";
    code = code + "var source=String(new java.lang.String(bytes,CS.UTF_8)),api=eval(source);if(api==null||String(api.version)!='" + p1RuntimeVersion + "')return 'ERROR|RUNTIME_VERSION_MISMATCH';if(String(api.buildIdentity)!='" + p1RuntimeBuildIdentity + "')return 'ERROR|RUNTIME_BUILD_IDENTITY_MISMATCH';return 'OK|'+String(api.version)+'|'+String(api.buildIdentity);";
    code = code + "}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}})();";
    status = "" + eval("js", code);
    if (!startsWith(status, "OK|")) {
        showStatus("CTL P1 runtime bloqueado: " + status);
        return 0;
    }
    return 1;
}


function p1EnsureSessionIdentity() {
    if (nImages() <= 0) return 0;
    if (!p1EnsureRuntime()) return 0;
    legacySessionId = p1ImageProperty("CTL.P1.legacy_analysis_session_id");
    if (legacySessionId == "NOT_APPLICABLE") legacySessionId = "";
    legacySessionJs = "null";
    if (legacySessionId != "") legacySessionJs = "'" + jsEscape(legacySessionId) + "'";
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),imp=Packages.ij.WindowManager.getCurrentImage();if(rt==null||imp==null)throw new Error('runtime_or_image_missing');";
    code = code + "var identity=rt.deriveLegacyImageIdentity('" + jsEscape(lightProjectRoot) + "','" + jsEscape(lightProjectUid) + "','" + jsEscape(lightImageId) + "'," + legacySessionJs + ");";
    code = code + "function bind(k,v){var old=imp.getProperty(k);if(old!=null&&String(old)!=''&&String(old)!=String(v))throw new Error('identity_evidence_conflict:'+k);imp.setProperty(k,String(v));}";
    code = code + "bind('CTL.P1.image_uid',identity.image_uid);bind('CTL.P1.image_uid_generation_method',identity.image_uid_generation_method);bind('CTL.P1.image_uid_name_template_id',identity.image_uid_name_template_id);bind('CTL.P1.image_uid_name_utf8_sha256',identity.image_uid_name_utf8_sha256);bind('CTL.P1.image_parent_identity_component',identity.image_parent_identity_component);";
    code = code + "bind('CTL.P1.legacy_image_parent_identity_token',identity.legacy_image_parent_identity_token);bind('CTL.P1.legacy_image_parent_identity_token_method',identity.legacy_image_parent_identity_token_method);bind('CTL.P1.legacy_image_registry_relative_path',identity.legacy_image_registry_relative_path);bind('CTL.P1.legacy_image_registry_row_ordinal',identity.legacy_image_registry_row_ordinal);bind('CTL.P1.legacy_image_registry_row_sha256',identity.legacy_image_registry_row_sha256);";
    code = code + "bind('CTL.P1.analysis_session_id',identity.analysis_session_id);bind('CTL.P1.analysis_session_id_origin',identity.analysis_session_id_origin);bind('CTL.P1.analysis_session_uid',identity.analysis_session_uid);bind('CTL.P1.analysis_session_uid_generation_method',identity.analysis_session_uid_generation_method);bind('CTL.P1.analysis_session_uid_name_template_id',identity.analysis_session_uid_name_template_id);bind('CTL.P1.analysis_session_uid_name_utf8_sha256',identity.analysis_session_uid_name_utf8_sha256);bind('CTL.P1.legacy_analysis_session_id',identity.legacy_analysis_session_id);bind('CTL.P1.legacy_analysis_session_identity_component',identity.legacy_analysis_session_identity_component);bind('CTL.P1.legacy_analysis_session_identity_component_origin',identity.legacy_analysis_session_identity_component_origin);";
    code = code + "return 'OK\\t'+identity.image_uid+'\\t'+identity.analysis_session_id+'\\t'+identity.analysis_session_uid;}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n\\t|]/g,' ');}})();";
    identityResult = "" + eval("js", code);
    if (startsWith(identityResult,"ERROR|")) {
        showStatus("CTL P1 identidad WP-17 bloqueada: " + identityResult);
        return 0;
    }
    identityFields = split(identityResult,"\t");
    if (identityFields.length != 4 || identityFields[0] != "OK") return 0;
    p1ImageUid = identityFields[1];
    p1AnalysisSessionId = identityFields[2];
    p1AnalysisSessionUid = identityFields[3];
    existingWorking = p1ImageProperty("CTL.P1.working_state_id");
    if (existingWorking != "") p1WorkingStateId = existingWorking;
    if (p1WorkingStateId == "") p1WorkingStateId = "WORKING_" + substring(replace(lightUuid(),"-",""),0,16);
    if (p1GenerationToken < 1) p1GenerationToken = 1;
    return 1;
}


function p1ResetExpectedPixelBindingGlobals() {
    p1MasterPixelSha256 = "";
    p1MasterPixelHashStatus = "NOT_VERIFIED";
    p1ExpectedPixelBindingStatus = "NOT_BOUND";
}


function p1ResetImageScopedRuntimeGlobals() {
    p1ImageUid = "";
    p1AnalysisSessionId = "";
    p1AnalysisSessionUid = "";
    p1WorkingStateId = "";
    p1GenerationToken = 1;
    p1SelectionRevision = 0;
    p1LastOperationContextJson = "";
    p1ResetExpectedPixelBindingGlobals();
}


function p1ClearCurrentExpectedPixelBindingInMemory() {
    p1ResetExpectedPixelBindingGlobals();
    if (nImages() <= 0) return 1;
    code = "(function(){var imp=Packages.ij.WindowManager.getCurrentImage(),keys=['CTL.P1.source_sha256_actual','CTL.P1.source_hash_status','CTL.P1.master_pixel_sha256','CTL.P1.master_pixel_sha256_actual','CTL.P1.master_pixel_sha256_expected','CTL.P1.master_pixel_sha256_expected_method','CTL.P1.master_pixel_sha256_expected_origin_schema','CTL.P1.master_pixel_sha256_expected_origin_sha256','CTL.P1.master_pixel_sha256_expected_origin_path','CTL.P1.master_pixel_sha256_expected_origin_implementation_commit','CTL.P1.master_pixel_sha256_expected_origin_source_sha256','CTL.P1.master_pixel_sha256_expected_origin_image_id','CTL.P1.master_pixel_sha256_expected_origin_binding_key','CTL.P1.master_pixel_sha256_expected_origin_install_config_sha256','CTL.P1.master_pixel_sha256_expected_origin_staging_record_sha256','CTL.P1.master_pixel_sha256_expected_binding_status','CTL.P1.master_pixel_hash_error','CTL.P1.master_pixel_hash_method','CTL.P1.master_width_px','CTL.P1.master_height_px','CTL.P1.image_role'];if(imp==null)return 'OK';for(var i=0;i<keys.length;i++)imp.setProperty(keys[i],null);imp.setProperty('CTL.P1.source_hash_status','NOT_VERIFIED');imp.setProperty('CTL.P1.master_pixel_hash_status','NOT_VERIFIED');return 'OK';})();";
    clearResult = "" + eval("js", code);
    if (clearResult == "OK") return 1;
    return 0;
}


function p1ConfigureExpectedPixelFreezeRootReadOnly() {
    selectedFreezeRoot = getDirectory("Selecciona la raiz EXTERNA de freezes P1 (solo lectura)");
    if (selectedFreezeRoot == "") return 0;
    p1ExpectedPixelFreezeRoot = normalizeStoredPath(selectedFreezeRoot);
    p1ClearCurrentExpectedPixelBindingInMemory();
    showStatus("Raiz externa de freezes P1 configurada solo en memoria.");
    return 1;
}


function p1BindExpectedPixelFreezeReadOnly() {
    if (nImages() <= 0) return 0;
    if (p1ExpectedPixelFreezeRoot == "" && !p1ConfigureExpectedPixelFreezeRootReadOnly()) return 0;
    if (lightImageId == "" || lightSourceSha256 == "") return 0;
    sourcePath = p1ResolveSourcePathReadOnly();
    if (sourcePath == "") return 0;
    if (!p1ClearCurrentExpectedPixelBindingInMemory()) return 0;
    code = "(function(){try{var IJ=Packages.ij.IJ,WM=Packages.ij.WindowManager,F=Packages.java.io.File,Files=Packages.java.nio.file.Files,MD=Packages.java.security.MessageDigest,CS=Packages.java.nio.charset.StandardCharsets,imp=WM.getCurrentImage(),root=new F('" + jsEscape(p1ExpectedPixelFreezeRoot) + "').getCanonicalFile(),imageId='" + jsEscape(lightImageId) + "',sourceSha='" + jsEscape(toLowerCase(lightSourceSha256)) + "',sourceFile=new F('" + jsEscape(sourcePath) + "').getCanonicalFile(),projectRoot=new F('" + jsEscape(lightProjectRoot) + "').getCanonicalFile(),fijiRoot=new F(IJ.getDirectory('imagej')).getCanonicalFile(),pluginRoot=new F(IJ.getDirectory('plugins'),'Cavity_TEM_Light').getCanonicalFile();";
    code = code + "function req(c,m){if(!c)throw new Error(m);}function hex(a){var s='',v;for(var i=0;i<a.length;i++){v=a[i];if(v<0)v+=256;if(v<16)s+='0';s+=v.toString(16);}return s;}function shaBytes(b){return hex(MD.getInstance('SHA-256').digest(b));}function shaFile(f){return shaBytes(Files.readAllBytes(f.toPath()));}function exact(o,n){if(o==null||typeof o!='object'||Array.isArray(o))return false;var a=Object.keys(o).sort(),b=n.split('|').sort();return a.length===b.length&&a.join('|')===b.join('|');}function ordered(v){if(Array.isArray(v)){var a=[];for(var i=0;i<v.length;i++)a.push(ordered(v[i]));return a;}if(v!=null&&typeof v==='object'){var o={},k=Object.keys(v).sort();for(var j=0;j<k.length;j++)o[k[j]]=ordered(v[k[j]]);return o;}return v;}function lowerPath(f){return String(f.getCanonicalPath()).toLowerCase();}function under(f,r){var p=lowerPath(f),q=lowerPath(r),sep=String(F.separator);return p===q||p.indexOf(q+sep)===0;}function plainFile(f){return f.isFile()&&!Files.isSymbolicLink(f.toPath());}function posInt(v){return typeof v==='number'&&isFinite(v)&&Math.floor(v)===v&&v>0;}";
    code = code + "req(imp!=null,'NO_IMAGE');req(root.isDirectory(),'FREEZE_ROOT_NOT_DIRECTORY');req(!under(root,projectRoot)&&!under(projectRoot,root)&&!under(root,fijiRoot)&&!under(fijiRoot,root)&&!under(root,pluginRoot)&&!under(pluginRoot,root),'FREEZE_ROOT_NOT_EXTERNAL');req(/^[A-Za-z0-9][A-Za-z0-9._-]{0,199}$/.test(imageId),'IMAGE_ID_PATH_UNSAFE');req(/^[0-9a-f]{64}$/.test(sourceSha),'SOURCE_SHA256_INVALID');var imageDir=new F(root,imageId).getCanonicalFile();req(imageDir.getParentFile().equals(root),'IMAGE_DIRECTORY_ESCAPE');var leaf=new F(imageDir,sourceSha).getCanonicalFile();req(leaf.getParentFile().equals(imageDir)&&leaf.isDirectory(),'FREEZE_BINDING_LEAF_MISSING');var listed=leaf.list(),names=[];req(listed!=null,'FREEZE_BINDING_LEAF_UNREADABLE');for(var ni=0;ni<listed.length;ni++)names.push(String(listed[ni]));names.sort();req(names.join('|')==='CTL_MASTER_PIXEL_SHA256_V1_EXPECTED_FREEZE.json|CTL_MASTER_PIXEL_SHA256_V1_EXPECTED_FREEZE.json.sha256','FREEZE_BINDING_LEAF_NOT_CLOSED');";
    code = code + "var freeze=new F(leaf,'CTL_MASTER_PIXEL_SHA256_V1_EXPECTED_FREEZE.json').getCanonicalFile(),sidecar=new F(leaf,'CTL_MASTER_PIXEL_SHA256_V1_EXPECTED_FREEZE.json.sha256').getCanonicalFile();req(freeze.getParentFile().equals(leaf)&&sidecar.getParentFile().equals(leaf)&&plainFile(freeze)&&plainFile(sidecar),'FREEZE_FILES_NOT_PLAIN');var raw=Files.readAllBytes(freeze.toPath()),sideBytes=Files.readAllBytes(sidecar.toPath()),sideText=String(new java.lang.String(sideBytes,CS.US_ASCII)),match=/^([0-9a-f]{64})  ([1-9][0-9]*)  CTL_MASTER_PIXEL_SHA256_V1_EXPECTED_FREEZE.json\\n$/.exec(sideText);req(match!=null,'FREEZE_SIDECAR_INVALID');var actual=shaBytes(raw);req(actual===match[1]&&Number(match[2])===raw.length,'FREEZE_SIDECAR_MISMATCH');var decoded=new java.lang.String(raw,CS.UTF_8),text=String(decoded),roundTrip=decoded.getBytes(CS.UTF_8);req(raw.length>0&&!(raw.length>=3&&Number(raw[0])===-17&&Number(raw[1])===-69&&Number(raw[2])===-65)&&java.util.Arrays.equals(raw,roundTrip)&&text.indexOf('\\r')<0&&/\\n$/.test(text),'FREEZE_JSON_ENCODING_INVALID');var e=JSON.parse(text);req(text===JSON.stringify(ordered(e),null,2)+'\\n','FREEZE_JSON_NOT_CANONICAL');";
    code = code + "req(exact(e,'bio_formats|claim_boundary|classification|controlled_source|evidence_schema|expected_pixel_freeze_candidate|implementation_commit|master_pixel|normalized_payload|probe_descriptor|public_distribution_ready|staging_evidence|status|t_view_001'),'FREEZE_FIELDS_NOT_CLOSED');req(e.evidence_schema==='CTL_MASTER_PIXEL_EXPECTED_FREEZE_V1'&&e.classification==='RESTRICTED_LOCAL_CAMPAIGN_EVIDENCE'&&e.status==='EXPECTED_PIXEL_FROZEN_PENDING_T_VIEW_001'&&e.t_view_001==='NOT_RUN'&&e.expected_pixel_freeze_candidate===true&&e.public_distribution_ready===false,'FREEZE_STATE_INVALID');var claims=e.claim_boundary;req(exact(claims,'P2_FULL_SUPPLEMENT_READY|fiji_real_executed|final_version|functional_release|global_release|installer_executed|prompt2_started|public_distribution_ready|r10_final_status|scientific_validation|test_pass_assigned'),'FREEZE_CLAIMS_FIELDS');req(claims.P2_FULL_SUPPLEMENT_READY===false&&claims.fiji_real_executed===false&&claims.final_version===false&&claims.functional_release===false&&claims.global_release===false&&claims.installer_executed===false&&claims.prompt2_started===false&&claims.public_distribution_ready===false&&claims.r10_final_status==='NOT_GRANTED'&&claims.scientific_validation===false&&claims.test_pass_assigned===false,'FREEZE_FORBIDDEN_CLAIM');";
    code = code + "var configFile=new F(pluginRoot,'p1_runtime_config.json'),stageFile=new F(pluginRoot,'campaign_staging_record.json');req(plainFile(configFile)&&plainFile(stageFile),'STAGING_BINDING_FILES_ABSENT');var config=JSON.parse(String(new java.lang.String(Files.readAllBytes(configFile.toPath()),CS.UTF_8))),stage=JSON.parse(String(new java.lang.String(Files.readAllBytes(stageFile.toPath()),CS.UTF_8))),commit=String(e.implementation_commit||''),configSha=shaFile(configFile);req(config.schema==='CTL_P1_RUNTIME_CONFIG_V2'&&config.install_mode==='STAGING_NOT_PRODUCTION_INSTALLER'&&config.candidate_id==='Cavity_TEM_Light_v1_2_0_R10_DEV01'&&stage.schema==='CTL_P1_FIJI_CAMPAIGN_STAGING_V1'&&stage.install_mode==='STAGING_NOT_PRODUCTION_INSTALLER'&&stage.candidate_id===config.candidate_id&&stage.classification==='RESTRICTED_LOCAL_CAMPAIGN_EVIDENCE'&&stage.claim_boundary&&stage.claim_boundary.test_pass_assigned===false&&stage.runtime_config_sha256===configSha,'STAGING_BINDING_INVALID');req(/^[0-9a-f]{40}$/.test(commit)&&String(config.implementation_commit)===commit&&String(stage.implementation_commit)===commit,'FREEZE_IMPLEMENTATION_COMMIT_MISMATCH');";
    code = code + "req(exact(e.controlled_source,'bytes|sha256')&&e.controlled_source.sha256===sourceSha&&posInt(e.controlled_source.bytes),'FREEZE_SOURCE_INVALID');req(sourceFile.isFile()&&Number(sourceFile.length())===e.controlled_source.bytes&&shaFile(sourceFile)===sourceSha,'LIVE_SOURCE_IDENTITY_MISMATCH');var m=e.master_pixel;req(exact(m,'bit_depth|channels|frames|height|method|sha256|slices|width')&&m.method==='CTL_MASTER_PIXEL_SHA256_V1'&&/^[0-9a-f]{64}$/.test(String(m.sha256||''))&&posInt(m.width)&&posInt(m.height)&&posInt(m.bit_depth)&&(m.bit_depth===8||m.bit_depth===16||m.bit_depth===24||m.bit_depth===32)&&m.channels===1&&m.slices===1&&m.frames===1,'FREEZE_MASTER_INVALID');req(m.width===Number(imp.getWidth())&&m.height===Number(imp.getHeight())&&m.bit_depth===Number(imp.getBitDepth())&&Number(imp.getStackSize())===1&&Number(imp.getNChannels())===1&&Number(imp.getNSlices())===1&&Number(imp.getNFrames())===1,'FREEZE_DIMENSIONS_MISMATCH');req(exact(e.bio_formats,'decoder|jar_sha256')&&e.bio_formats.decoder==='loci.plugins.BF.openImagePlus'&&/^[0-9a-f]{64}$/.test(String(e.bio_formats.jar_sha256||'')),'FREEZE_DECODER_INVALID');var bpp=m.bit_depth===24?3:m.bit_depth/8;req(exact(e.normalized_payload,'bytes|sha256')&&posInt(e.normalized_payload.bytes)&&e.normalized_payload.bytes===m.width*m.height*bpp&&/^[0-9a-f]{64}$/.test(String(e.normalized_payload.sha256||'')),'FREEZE_PAYLOAD_INVALID');req(exact(e.probe_descriptor,'bytes|imagej_version|sha256')&&posInt(e.probe_descriptor.bytes)&&String(e.probe_descriptor.imagej_version||'')!==''&&/^[0-9a-f]{64}$/.test(String(e.probe_descriptor.sha256||'')),'FREEZE_PROBE_INVALID');req(exact(e.staging_evidence,'bytes|sha256')&&posInt(e.staging_evidence.bytes)&&/^[0-9a-f]{64}$/.test(String(e.staging_evidence.sha256||'')),'FREEZE_STAGING_EVIDENCE_INVALID');";
    code = code + "var stageSha=shaFile(stageFile),bindingKey=imageId+'|'+sourceSha;imp.setProperty('CTL.P1.master_pixel_sha256',null);imp.setProperty('CTL.P1.master_pixel_sha256_expected',String(e.master_pixel.sha256));imp.setProperty('CTL.P1.master_pixel_sha256_expected_method','CTL_MASTER_PIXEL_SHA256_V1');imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_schema',String(e.evidence_schema));imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_sha256',actual);imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_path',freeze.getCanonicalPath());imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_implementation_commit',commit);imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_source_sha256',sourceSha);imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_image_id',imageId);imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_binding_key',bindingKey);imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_install_config_sha256',configSha);imp.setProperty('CTL.P1.master_pixel_sha256_expected_origin_staging_record_sha256',stageSha);imp.setProperty('CTL.P1.master_pixel_sha256_expected_binding_status','BOUND_FROM_INDEPENDENT_FREEZE');return ['OK',String(e.master_pixel.sha256),actual,commit,sourceSha,imageId,bindingKey].join('\\t');}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n\\t|]/g,' ');}})();";
    bindingResult = "" + eval("js", code);
    if (startsWith(bindingResult,"ERROR|")) {
        p1ClearCurrentExpectedPixelBindingInMemory();
        showStatus("CTL P1 freeze rechazado: " + bindingResult);
        showMessage("Freeze P1 rechazado", bindingResult + "\n\nNo se ha escrito el proyecto ni la fuente.");
        return 0;
    }
    bindingFields = split(bindingResult,"\t");
    if (bindingFields.length != 7 || bindingFields[0] != "OK") {
        p1ClearCurrentExpectedPixelBindingInMemory();
        return 0;
    }
    p1MasterPixelSha256 = toLowerCase(bindingFields[1]);
    p1ExpectedPixelBindingStatus = "BOUND_FROM_INDEPENDENT_FREEZE";
    showStatus("expectedPixel P1 ligado read-only: " + bindingFields[5]);
    return 1;
}


function p1BindAndVerifyExpectedPixelFreezeReadOnly() {
    if (!p1BindExpectedPixelFreezeReadOnly()) return;
    stampOk = p1StampImageContext();
    verifyStatus = "NOT_VERIFIED";
    if (stampOk) verifyStatus = p1VerifyMaster();
    if (!stampOk || verifyStatus != "VERIFIED") {
        showMessage("Master P1 no verificado", "El freeze fue rechazado por la verificacion source/master. No se escribio ningun original.");
        return;
    }
    showMessage("Master P1 verificado", "El source y los pixeles master coinciden con el freeze independiente ligado a image_id + source_sha256.");
}


function p1StampImageContext() {
    if (nImages() <= 0) return 0;
    if (!p1EnsureSessionIdentity()) return 0;
    p1MasterPixelSha256 = "";
    expectedPixel = "";
    masterHashStatus = p1ImageProperty("CTL.P1.master_pixel_hash_status");
    if (masterHashStatus == "VERIFIED") expectedPixel = p1ImageProperty("CTL.P1.master_pixel_sha256");
    if (expectedPixel != "") p1MasterPixelSha256 = toLowerCase(expectedPixel);
    storedGeneration = parseFloat(p1ImageProperty("CTL.P1.generation_token"));
    if (!isNaN(storedGeneration) && storedGeneration >= 1) p1GenerationToken = floor(storedGeneration);
    storedSelection = parseFloat(p1ImageProperty("CTL.P1.selection_revision"));
    if (!isNaN(storedSelection) && storedSelection >= 0) p1SelectionRevision = floor(storedSelection);
    updateScaleMaybe();
    scaleMethod = p1ImageProperty("CTL.P1.scale_method");
    if (scaleMethod == "") scaleMethod = lightScaleOrigin;
    if (scaleMethod == "") scaleMethod = "NOT_VERIFIED";
    code = "(function(){var imp=Packages.ij.WindowManager.getCurrentImage();if(imp==null)return 'NO_IMAGE';";
    code = code + "function put(k,v){imp.setProperty(k,String(v));}";
    code = code + "put('CTL.P1.project_id','" + jsEscape(lightProjectId) + "');put('CTL.P1.project_uid','" + jsEscape(lightProjectUid) + "');";
    code = code + "put('CTL.P1.image_id','" + jsEscape(lightImageId) + "');put('CTL.P1.image_uid','" + jsEscape(p1ImageUid) + "');put('CTL.P1.source_sha256','" + jsEscape(toLowerCase(lightSourceSha256)) + "');";
    if (p1MasterPixelSha256 != "") code = code + "put('CTL.P1.master_pixel_sha256','" + jsEscape(p1MasterPixelSha256) + "');";
    code = code + "put('CTL.P1.analysis_session_id','" + jsEscape(p1AnalysisSessionId) + "');put('CTL.P1.analysis_session_uid','" + jsEscape(p1AnalysisSessionUid) + "');";
    code = code + "put('CTL.P1.revision_id','NOT_APPLICABLE');put('CTL.P1.revision_uid','NOT_APPLICABLE');put('CTL.P1.working_state_id','" + jsEscape(p1WorkingStateId) + "');";
    code = code + "put('CTL.P1.generation_token','" + p1GenerationToken + "');put('CTL.P1.selection_revision','" + p1SelectionRevision + "');";
    code = code + "put('CTL.P1.scale_x_nm_px','" + d2s(nmPerPixelX,15) + "');put('CTL.P1.scale_y_nm_px','" + d2s(nmPerPixelY,15) + "');";
    code = code + "put('CTL.P1.scale_method','" + jsEscape(scaleMethod) + "');put('CTL.P1.resize_step_nm','" + d2s(lightInteractiveResizeStepNm,9) + "');";
    code = code + "put('CTL.P1.technical_preview','true');put('CTL.P1.scientific_validation','false');put('CTL.P1.functional_release','false');return 'OK';})();";
    result = "" + eval("js", code);
    if (result == "OK") return 1;
    return 0;
}


function p1StampCurrentRoiIdentity() {
    if (nImages() <= 0 || selectionType() == -1) return 0;
    if (!p1EnsureSessionIdentity()) return 0;
    objectUuid = Roi.getProperty("Object_uuid");
    if (objectUuid == "") {
        objectUuid = lightUuid();
        Roi.setProperty("Object_uuid", objectUuid);
        Roi.setProperty("Object_uuid_generation_method", "UUIDV4_RANDOM");
    }
    Roi.setProperty("object_uuid", objectUuid);
    cavityId = Roi.getProperty("Cavity_id");
    if (cavityId != "") Roi.setProperty("cavity_id", cavityId);
    Roi.setProperty("Project_id", lightProjectId);
    Roi.setProperty("Project_uid", lightProjectUid);
    Roi.setProperty("Image_id", lightImageId);
    Roi.setProperty("Image_uid", p1ImageUid);
    Roi.setProperty("Analysis_session_id", p1AnalysisSessionId);
    Roi.setProperty("Analysis_session_uid", p1AnalysisSessionUid);
    Roi.setProperty("Working_state_id", p1WorkingStateId);
    Roi.setProperty("Revision_id", "NOT_APPLICABLE");
    Roi.setProperty("Revision_uid", "NOT_APPLICABLE");
    Roi.setProperty("Generation_token", d2s(p1GenerationToken,0));
    return 1;
}


function p1CaptureOperationContext(commandId) {
    p1LastOperationContextJson = "";
    if (!p1EnsureRuntime() || !p1StampImageContext()) return "";
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),imp=Packages.ij.WindowManager.getCurrentImage();return rt.capture(imp,'" + jsEscape(commandId) + "').json;}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}})();";
    result = "" + eval("js", code);
    if (startsWith(result,"ERROR|")) {
        showStatus("CTL P1 contexto bloqueado: " + result);
        return "";
    }
    p1LastOperationContextJson = result;
    return result;
}


function p1ContextStillCurrent(contextJson) {
    if (!p1EnsureRuntime() || contextJson == "") return 0;
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),wanted=JSON.parse('" + jsEscape(contextJson) + "'),imp=Packages.ij.WindowManager.getCurrentImage();if(imp==null)return '0';var live=rt.capture(imp,String(wanted.command_id));return live.context_fingerprint_sha256==String(wanted.context_fingerprint_sha256)?'1':'0';}catch(ex){return '0';}})();";
    result = "" + eval("js",code);
    if (result == "1") return 1;
    return 0;
}


function p1AwaitEvt006PrepareSwitch(contextJson) {
    // p1RunTransactionalOperation has already passed the runtime/master gate.
    // Avoid rebuilding the large embedded Base64 on the marker-absent path.
    if (contextJson == "") return "FAIL|EVT006_BARRIER_CONTEXT_ABSENT";
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime');if(rt==null||typeof rt.awaitEvt006PrepareSwitch!='function')throw new Error('EVT006_BARRIER_API_ABSENT');return String(rt.awaitEvt006PrepareSwitch('" + jsEscape(contextJson) + "'));}catch(ex){return 'FAIL|'+String(ex).replace(/[\\r\\n\\t|]/g,' ');}})();";
    return "" + eval("js",code);
}


function p1AuditStale(contextJson, operation) {
    code = "(function(){var imp=Packages.ij.WindowManager.getCurrentImage();if(imp!=null){imp.setProperty('CTL.P1.last_event','STALE_CONTEXT_CANCELLED');imp.setProperty('CTL.P1.last_event_detail','" + jsEscape(operation) + "');imp.setProperty('CTL.P1.last_event_mutations','0');imp.setProperty('CTL.P1.last_event_roi_manager_changes','0');imp.setProperty('CTL.P1.last_event_disk_writes','AUDIT_EVENT_ONLY');}Packages.ij.IJ.log('CTL P1 STALE_CONTEXT_CANCELLED: " + jsEscape(operation) + "');return 'OK';})();";
    eval("js",code);
}


function p1VerifyMaster() {
    if (nImages() <= 0 || !p1EnsureRuntime()) return "NOT_VERIFIED";
    if (!p1StampImageContext()) return "NOT_VERIFIED";
    sourcePath = p1ResolveSourcePathReadOnly();
    if (sourcePath == "") return "NOT_VERIFIED";
    expectedPixel = p1ImageProperty("CTL.P1.master_pixel_sha256_expected");
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),imp=Packages.ij.WindowManager.getCurrentImage();return String(rt.verifyMaster(imp,'" + jsEscape(sourcePath) + "','" + jsEscape(toLowerCase(lightSourceSha256)) + "','" + jsEscape(toLowerCase(expectedPixel)) + "'));}catch(ex){return 'NOT_VERIFIED';}})();";
    p1MasterPixelHashStatus = "" + eval("js",code);
    if (p1MasterPixelHashStatus == "VERIFIED") p1MasterPixelSha256 = toLowerCase(expectedPixel);
    else {
        p1MasterPixelSha256 = "";
        eval("js","var imp=Packages.ij.WindowManager.getCurrentImage();if(imp!=null)imp.setProperty('CTL.P1.master_pixel_sha256',null);");
    }
    return p1MasterPixelHashStatus;
}


function p1VerifyMasterReadOnly() {
    status = p1VerifyMaster();
    if (status == "VERIFIED") showMessage("Master P1 verificado", "source_sha256 y master_pixel_sha256 coinciden. La verificacion fue exclusivamente read-only.");
    else if (status == "MISMATCH") showMessage("Master P1 rechazado", "source_sha256 o master_pixel_sha256 no coincide. No se realizo ninguna escritura cientifica.");
    else showMessage("Master P1 no verificado", "Falta evidencia cerrada suficiente. No se realizo ninguna escritura cientifica.");
}


function p1RequireScientificWrite(actionText) {
    status = p1VerifyMaster();
    if (status == "VERIFIED") {
        if (!p1EnsureRuntime()) status = "NOT_VERIFIED";
        else {
            gateCode = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),imp=Packages.ij.WindowManager.getCurrentImage();if(rt==null||imp==null||typeof rt.scientificWriteAllowed!='function')throw new Error('runtime_gate_missing');return rt.scientificWriteAllowed(imp)?'ALLOWED':'BLOCKED';}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}})();";
            gateStatus = "" + eval("js",gateCode);
            if (gateStatus == "ALLOWED") return 1;
            status = "NOT_VERIFIED";
        }
    }
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),imp=Packages.ij.WindowManager.getCurrentImage();if(rt==null||imp==null)throw new Error('runtime_or_image_missing');rt.telemetryBlocked(imp,'" + jsEscape(actionText) + "','" + jsEscape(status) + "');return 'OK';}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}})();";
    telemetryStatus = "" + eval("js",code);
    if (startsWith(telemetryStatus,"ERROR|")) showStatus("CTL P1 bloqueo telemetrico: " + telemetryStatus);
    if (status == "MISMATCH") showMessage("Fuente rechazada", "CTL P1 detecto MISMATCH de source/master pixels. " + actionText + " queda bloqueado.");
    else showMessage("Solo inspeccion read-only", "master_pixel_hash_status=NOT_VERIFIED. CTL P1 permite inspeccion/migracion read-only, pero bloquea " + actionText + ".");
    return 0;
}


function p1InstallInteractionListeners(verbose) {
    if (nImages() <= 0 || !p1EnsureRuntime()) return;
    p1StampImageContext();
    code = "(function(){var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime');return String(rt.install(Packages.ij.WindowManager.getCurrentImage()));})();";
    result = "" + eval("js",code);
    lightInteractiveControllerStatus = result;
    if (verbose) showStatus("CTL P1 listeners: " + result);
}


function p1QueueCommand(commandId, internalMacro, requireVerifiedMaster) {
    if (requireVerifiedMaster && !p1RequireScientificWrite(commandId)) return;
    contextJson = p1CaptureOperationContext(commandId);
    if (contextJson == "") return;
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),imp=Packages.ij.WindowManager.getCurrentImage(),ctx=rt.capture(imp,'" + jsEscape(commandId) + "');rt.submit(ctx,'" + jsEscape(commandId) + "','" + jsEscape(internalMacro) + "',false,null);return 'QUEUED';}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}})();";
    result = "" + eval("js",code);
    showStatus("CTL P1 " + commandId + ": " + result);
}


function p1BridgePayloadParametersJson() {
    updateScaleMaybe();
    method = p1ImageProperty("CTL.P1.scale_method");
    if (method == "") method = lightScaleOrigin;
    if (method == "") method = "NOT_VERIFIED";
    thicknessStatus = "UNKNOWN";
    if (lightThicknessNm > 0) thicknessStatus = "KNOWN";
    a = "{";
    a = a + "\"scale_x_nm_px\":" + jsonNumber(nmPerPixelX) + ",\"scale_y_nm_px\":" + jsonNumber(nmPerPixelY) + ",";
    a = a + "\"scale_method\":\"" + jsonEscape(method) + "\",";
    a = a + "\"analysis_parameters\":{";
    a = a + "\"classification_policy\":\"PRIMARY_CONFIRMED_ONLY_WITH_SENSITIVITY\",\"validity_update_mode\":\"INDEPENDENT_FLAGS\",";
    a = a + "\"image_mode\":\"" + jsonEscape(lightImageMode) + "\",\"use_whole_image\":" + lightUseWholeImage + ",";
    a = a + "\"thickness_nm\":" + jsonNumber(lightThicknessNm) + ",\"thickness_status\":\"" + thicknessStatus + "\",";
    a = a + "\"histogram_bin_nm\":" + jsonNumber(lightHistogramBinNm) + ",\"feature_distance_bin_nm\":" + jsonNumber(lightFeatureDistanceBinNm) + "},";
    base = "images/" + lightImageId;
    a = a + "\"revisions_relative_path\":\"" + jsonEscape(base + "/roi_sessions") + "\",";
    a = a + "\"current_run_pointer_relative_path\":\"" + jsonEscape(base + "/current_run.tsv") + "\",";
    a = a + "\"run_registry_relative_path\":\"" + jsonEscape(base + "/run_registry.json") + "\",";
    a = a + "\"runs_relative_path\":\"" + jsonEscape(base + "/measurement_runs") + "\",";
    ids = p1ImageProperty("CTL.P1.combined_selected_image_ids");
    idArray = split(ids,";");
    a = a + "\"selected_image_ids\":[";
    pointerJson = "";
    for (pi=0; pi<idArray.length; pi++) {
        if (idArray[pi] == "") continue;
        if (pointerJson != "") pointerJson = pointerJson + ",";
        pointerJson = pointerJson + "\"" + jsonEscape(idArray[pi]) + "\"";
    }
    a = a + pointerJson + "],\"current_run_pointer_relative_paths\":[";
    pointerJson = "";
    for (pi=0; pi<idArray.length; pi++) {
        if (idArray[pi] == "") continue;
        if (pointerJson != "") pointerJson = pointerJson + ",";
        pointerJson = pointerJson + "\"images/" + jsonEscape(idArray[pi]) + "/current_run.tsv\"";
    }
    a = a + pointerJson + "],\"combined_runs_relative_path\":\"combined_runs\",";
    a = a + "\"load_revision_relative_path\":\"" + jsonEscape(p1LoadRevisionRelativePath) + "\",";
    a = a + "\"current_revision_pointer_relative_path\":\"" + jsonEscape(base + "/current_revision_p1.json") + "\",";
    a = a + "\"load_working_state_id\":\"" + jsonEscape(p1LoadWorkingStateId) + "\"}";
    return a;
}


function p1BridgeCall(operation, phase, contextJson, prepareToken) {
    if (!p1EnsureRuntime()) return "FAIL|RUNTIME_UNAVAILABLE";
    if (operatorName == "") return "FAIL|OPERATOR_ID_REQUIRED";
    parametersJson = "";
    if (phase == "PREPARE" || phase == "EXECUTE") parametersJson = p1BridgePayloadParametersJson();
    sourcePath = p1ResolveSourcePathReadOnly();
    if (sourcePath == "") return "FAIL|CONTROLLED_LOCAL_SOURCE_UNAVAILABLE";
    code = "(function(){";
    code = code + "var IJ=Packages.ij.IJ,WM=Packages.ij.WindowManager,F=Packages.java.io.File,Files=Packages.java.nio.file.Files,CS=Packages.java.nio.charset.StandardCharsets,TimeUnit=Packages.java.util.concurrent.TimeUnit,PB=Packages.java.lang.ProcessBuilder,ArrayList=Packages.java.util.ArrayList,UUID=Packages.java.util.UUID,MD=Packages.java.security.MessageDigest,FIS=Packages.java.io.FileInputStream,Link=Packages.java.nio.file.LinkOption,Sys=Packages.java.lang.System;";
    code = code + "function read(f){return String(new java.lang.String(Files.readAllBytes(f.toPath()),CS.UTF_8));}function clean(s){return String(s).replace(/[\\r\\n|]/g,' ');}function exactChild(f,p,n){return f.getParentFile().getCanonicalPath()==p.getCanonicalPath()&&String(f.getName())==n;}function sha(f){var md=MD.getInstance('SHA-256'),s=new FIS(f),b=Packages.java.lang.reflect.Array.newInstance(java.lang.Byte.TYPE,1048576),n;try{while((n=s.read(b))>0)md.update(b,0,n);}finally{s.close();}var d=md.digest(),h='';for(var i=0;i<d.length;i++){var v=d[i]&255;h+=(v<16?'0':'')+v.toString(16);}return h;}function isSha(v){return /^[0-9a-f]{64}$/.test(String(v||''));}function safeRel(v){v=String(v||'');return v!=''&&v.indexOf('\\\\')<0&&v.indexOf('..')<0&&v.charAt(0)!='/'&&!/^[A-Za-z]:/.test(v)&&v.indexOf('//')<0;}var isWindows=String(Sys.getProperty('os.name')).toLowerCase().indexOf('windows')>=0,windowsReparseCache={},trustedFsutil=null,trustedFsutilCharset=null;function parseFsutilOutput(text,exitCode){var expression,match,tag=null,value,returnValue;returnValue=String(text||'');if(returnValue==''||returnValue.indexOf(String.fromCharCode(65533))>=0)throw new Error('trusted_fsutil_encoding_or_empty');expression=/0x([0-9a-f]{8})/ig;while((match=expression.exec(returnValue))!=null){value=parseInt(String(match[1]),16);if(tag!=null&&tag!==value)throw new Error('trusted_fsutil_ambiguous_tags');tag=value;}if(tag!=null&&Number(exitCode)===0)return tag;if(Number(exitCode)!==0&&/(^|[^0-9])4390([^0-9]|$)/.test(returnValue)&&/not\\s+(?:a\\s+)?reparse\\s+point|no\\s+es\\s+un\\s+punto/i.test(returnValue))return 0;throw new Error('trusted_fsutil_ambiguous_result');}function fsutilTag(K,f){var chars,length,systemDirectory,args,builder,process,finished,input,output,buffer,count,text,exitCode,nativeArgs,getSystemDirectory,nativeLibrary,oemArgs,oemCodePage;if(trustedFsutil==null){nativeLibrary=Packages.com.sun.jna.NativeLibrary.getInstance('kernel32');chars=Packages.java.lang.reflect.Array.newInstance(java.lang.Character.TYPE,32768);nativeArgs=Packages.java.lang.reflect.Array.newInstance(Packages.java.lang.Object,2);nativeArgs[0]=chars;nativeArgs[1]=new Packages.java.lang.Integer(chars.length);getSystemDirectory=nativeLibrary.getFunction('GetSystemDirectoryW');length=Number(getSystemDirectory.invokeInt(nativeArgs));if(!(length>0&&length<chars.length))throw new Error('windows_system_directory_unavailable');systemDirectory=String(new java.lang.String(chars,0,length));trustedFsutil=new F(systemDirectory,'fsutil.exe').getCanonicalFile();if(!trustedFsutil.isFile()||(Number(K.GetFileAttributes(String(trustedFsutil.getAbsolutePath())))&1024)!=0)throw new Error('trusted_fsutil_invalid');oemArgs=Packages.java.lang.reflect.Array.newInstance(Packages.java.lang.Object,0);oemCodePage=Number(nativeLibrary.getFunction('GetOEMCP').invokeInt(oemArgs));if(!(oemCodePage>0&&Math.floor(oemCodePage)===oemCodePage))throw new Error('windows_oem_code_page_unavailable');trustedFsutilCharset=Packages.java.nio.charset.Charset.forName('Cp'+String(oemCodePage));}args=new ArrayList();args.add(String(trustedFsutil.getAbsolutePath()));args.add('reparsepoint');args.add('query');args.add(String(f.getAbsolutePath()));builder=new PB(args);builder.redirectErrorStream(true);process=builder.start();finished=process.waitFor(30,TimeUnit.SECONDS);if(!finished){process.destroyForcibly();throw new Error('trusted_fsutil_timeout');}exitCode=Number(process.exitValue());input=new Packages.java.io.BufferedInputStream(process.getInputStream());output=new Packages.java.io.ByteArrayOutputStream();buffer=Packages.java.lang.reflect.Array.newInstance(java.lang.Byte.TYPE,8192);while((count=input.read(buffer))!=-1)output.write(buffer,0,count);input.close();text=String(new java.lang.String(output.toByteArray(),trustedFsutilCharset));return parseFsutilOutput(text,exitCode);}function windowsNode(f,leaf){var K,WB,SI,FI,DW,handle=null,standardInfo,fileIdInfo,attrs,identity,cacheKey,tag,idBytes,idHex='',i,v;try{K=Packages.com.sun.jna.platform.win32.Kernel32.INSTANCE;WB=Packages.com.sun.jna.platform.win32.WinBase;SI=Packages.com.sun.jna.platform.win32['WinBase$FILE_STANDARD_INFO'];FI=Packages.com.sun.jna.platform.win32['WinBase$FILE_ID_INFO'];DW=Packages.com.sun.jna.platform.win32['WinDef$DWORD'];attrs=Number(K.GetFileAttributes(String(f.getAbsolutePath())));if(attrs<0)throw new Error('windows_file_attributes_unavailable');if((attrs&1024)!=0)throw new Error('windows_reparse_point_blocked');handle=K.CreateFile(String(f.getAbsolutePath()),0,7,null,3,35651584,null);if(handle==null||WB.INVALID_HANDLE_VALUE.equals(handle))throw new Error('windows_handle_unavailable');standardInfo=new SI();if(!K.GetFileInformationByHandleEx(handle,1,standardInfo.getPointer(),new DW(standardInfo.size())))throw new Error('windows_link_count_unavailable');standardInfo.read();if(leaf&&Number(standardInfo.NumberOfLinks)!==1)throw new Error('hardlink_blocked');fileIdInfo=new FI();if(!K.GetFileInformationByHandleEx(handle,18,fileIdInfo.getPointer(),new DW(fileIdInfo.size())))throw new Error('windows_file_id_unavailable');fileIdInfo.read();idBytes=fileIdInfo.FileId.Identifier;if(idBytes==null||idBytes.length!==16)throw new Error('windows_file_id_invalid');for(i=0;i<idBytes.length;i++){v=Number(idBytes[i].longValue())&255;idHex+=(v<16?'0':'')+v.toString(16);}identity=String(fileIdInfo.VolumeSerialNumber)+':'+idHex;cacheKey=String(f.getAbsolutePath())+'|'+identity;if(windowsReparseCache[cacheKey]!==true){tag=fsutilTag(K,f);if(tag!==0)throw new Error('windows_fsutil_reparse_blocked');windowsReparseCache[cacheKey]=true;}}catch(nativeError){throw new Error('windows_path_safety_fail_closed');}finally{if(handle!=null){try{K.CloseHandle(handle);}catch(closeIgnored){}}}}function safeChain(f,leaf){var absolute=f.getAbsoluteFile(),current=absolute;if(!absolute.exists()||String(absolute.getAbsolutePath())!=String(absolute.getCanonicalPath()))return false;while(current!=null){if(Files.isSymbolicLink(current.toPath()))return false;if(isWindows)windowsNode(current,leaf&&String(current.getAbsolutePath())==String(absolute.getAbsolutePath()));current=current.getParentFile();}if(!isWindows&&leaf&&Number(Files.getAttribute(absolute.toPath(),'unix:nlink',Link.NOFOLLOW_LINKS))!==1)throw new Error('hardlink_blocked');return true;}function plain(f){return f.isFile()&&safeChain(f,true);}function safeDirectory(f){return f.isDirectory()&&safeChain(f,false);}";
    code = code + "function exactKeys(o,expected){var keys=[],k;for(k in o)if(Object.prototype.hasOwnProperty.call(o,k))keys.push(String(k));keys.sort();return keys.join('|')==expected;}";
    code = code + "function intValue(v){return typeof v=='number'&&isFinite(v)&&Math.floor(v)==v;}function rfc3339Utc(v){var s=String(v||''),m=/^([0-9]{4})-(0[1-9]|1[0-2])-([0-2][0-9]|3[01])T(?:[01][0-9]|2[0-3]):[0-5][0-9]:[0-5][0-9](?:\\.[0-9]{1,6})?Z$/.exec(s),y,mo,d,days;if(m==null)return false;y=Number(m[1]);mo=Number(m[2]);d=Number(m[3]);if(y<1||d<1)return false;days=[31,28,31,30,31,30,31,31,30,31,30,31];if((y%4==0&&y%100!=0)||y%400==0)days[1]=29;return d<=days[mo-1];}function claimBoundaryOk(v){return v!=null&&exactKeys(v,'P2_FULL_SUPPLEMENT_READY|fiji_real_executed|final_version|functional_release|global_release|installer_executed|prompt2_started|public_distribution_ready|r10_final_status|scientific_validation|test_pass_assigned')&&v.P2_FULL_SUPPLEMENT_READY===false&&v.fiji_real_executed===false&&v.final_version===false&&v.functional_release===false&&v.global_release===false&&v.installer_executed===false&&v.prompt2_started===false&&v.public_distribution_ready===false&&String(v.r10_final_status)=='NOT_GRANTED'&&v.scientific_validation===false&&v.test_pass_assigned===false;}function nativeRecordOk(v,withNlink){var expected=withNlink?'file_attributes|fsutil_cross_checked|fsutil_reparse_tag|is_reparse|method|nlink|reparse_tag':'file_attributes|fsutil_cross_checked|fsutil_reparse_tag|is_reparse|method|reparse_tag',method;return v!=null&&exactKeys(v,expected)&&intValue(v.file_attributes)&&v.file_attributes>=0&&(v.file_attributes&1024)===0&&typeof v.fsutil_cross_checked=='boolean'&&intValue(v.fsutil_reparse_tag)&&v.fsutil_reparse_tag===0&&v.is_reparse===false&&intValue(v.reparse_tag)&&v.reparse_tag===0&&(!withNlink||(intValue(v.nlink)&&v.nlink===1))&&((method=String(v.method))=='POSIX_LSTAT_WITH_OPTIONAL_WINDOWS_FIELDS'||method=='WIN32_FSUTIL_FSCTL_AND_FILE_ATTRIBUTE_TAG_INFO')&&(method!='POSIX_LSTAT_WITH_OPTIONAL_WINDOWS_FIELDS'||v.fsutil_cross_checked===false);}function rootNativeOk(v){return nativeRecordOk(v,false)&&(String(v.method)!='WIN32_FSUTIL_FSCTL_AND_FILE_ATTRIBUTE_TAG_INFO'||v.fsutil_cross_checked===true);}function pathSafetyRecordOk(v){var j,a,b;return v!=null&&exactKeys(v,'evidence_root|fiji_jna_artifacts|fiji_root|probe|python_executable|source_root')&&String(v.probe)=='native_path_identity'&&rootNativeOk(v.evidence_root)&&rootNativeOk(v.fiji_root)&&rootNativeOk(v.source_root)&&nativeRecordOk(v.python_executable,true)&&(j=v.fiji_jna_artifacts)!=null&&exactKeys(j,'jars/jna-5.14.0.jar|jars/jna-platform-5.14.0.jar')&&(a=j['jars/jna-5.14.0.jar'])!=null&&exactKeys(a,'bytes|sha256')&&intValue(a.bytes)&&a.bytes===1878533&&String(a.sha256)=='34ed1e1f27fa896bca50dbc4e99cf3732967cec387a7a0d5e3486c09673fe8c6'&&(b=j['jars/jna-platform-5.14.0.jar'])!=null&&exactKeys(b,'bytes|sha256')&&intValue(b.bytes)&&b.bytes===1369287&&String(b.sha256)=='ae4caceb3840730c2537f9b7fb55a01baba580286b4122951488bcee558c2449';}function profileRecordOk(v){return v!=null&&exactKeys(v,'column_count|header_sha256|identity_provenance_column|profile_sha256|runtime_sha256')&&intValue(v.column_count)&&v.column_count===234&&intValue(v.identity_provenance_column)&&v.identity_provenance_column===116&&declared['data/CTL_CAVITY_OBJECTS_TSV_PROFILE_V1.json']!=null&&String(v.profile_sha256)==String(declared['data/CTL_CAVITY_OBJECTS_TSV_PROFILE_V1.json'].sha256)&&declared['data/cavity_objects_header.tsv']!=null&&String(v.header_sha256)==String(declared['data/cavity_objects_header.tsv'].sha256)&&String(v.runtime_sha256)=='" + p1EmbeddedRuntimeSourceSha256 + "';}";
    code = code + "try{var imp=WM.getCurrentImage(),rt=IJ.getProperty('CTL.P1.Runtime');if(imp==null||rt==null)throw new Error('runtime_or_image_missing');";
    code = code + "var fijiLex=new F(IJ.getDirectory('imagej')).getAbsoluteFile(),jnaRootLex=new F(fijiLex,'jars').getAbsoluteFile(),jnaCoreLex=new F(jnaRootLex,'jna-5.14.0.jar').getAbsoluteFile(),jnaPlatformLex=new F(jnaRootLex,'jna-platform-5.14.0.jar').getAbsoluteFile();if(!fijiLex.isDirectory()||String(fijiLex.getAbsolutePath())!=String(fijiLex.getCanonicalPath())||Files.isSymbolicLink(fijiLex.toPath())||!jnaRootLex.isDirectory()||String(jnaRootLex.getAbsolutePath())!=String(jnaRootLex.getCanonicalPath())||Files.isSymbolicLink(jnaRootLex.toPath())||!jnaCoreLex.isFile()||Number(jnaCoreLex.length())!==1878533||sha(jnaCoreLex)!='34ed1e1f27fa896bca50dbc4e99cf3732967cec387a7a0d5e3486c09673fe8c6'||!jnaPlatformLex.isFile()||Number(jnaPlatformLex.length())!==1369287||sha(jnaPlatformLex)!='ae4caceb3840730c2537f9b7fb55a01baba580286b4122951488bcee558c2449')throw new Error('jna_preload_integrity_mismatch');if(!safeDirectory(fijiLex)||!plain(jnaCoreLex)||!plain(jnaPlatformLex)||sha(jnaCoreLex)!='34ed1e1f27fa896bca50dbc4e99cf3732967cec387a7a0d5e3486c09673fe8c6'||sha(jnaPlatformLex)!='ae4caceb3840730c2537f9b7fb55a01baba580286b4122951488bcee558c2449')throw new Error('fiji_or_jna_path_unsafe');var fiji=fijiLex.getCanonicalFile(),pkgLex=new F(new F(fiji,'plugins'),'Cavity_TEM_Light').getAbsoluteFile();if(!safeDirectory(pkgLex))throw new Error('package_path_unsafe');var pkg=pkgLex.getCanonicalFile(),companionLex=new F(pkg,'python_companion').getAbsoluteFile();if(!safeDirectory(companionLex))throw new Error('companion_path_unsafe');var companion=companionLex.getCanonicalFile(),bridge=new F(companion,'ctl_p1_bridge.py').getAbsoluteFile(),configFile=new F(pkg,'p1_runtime_config.json').getAbsoluteFile(),manifestFile=new F(companion,'" + p1RuntimeManifestName + "').getAbsoluteFile();";
    code = code + "if(!plain(bridge)||!exactChild(bridge,companion,'ctl_p1_bridge.py')||!plain(configFile)||!exactChild(configFile,pkg,'p1_runtime_config.json')||!plain(manifestFile)||!exactChild(manifestFile,companion,'" + p1RuntimeManifestName + "'))throw new Error('fixed_install_layout_missing');if(sha(manifestFile)!='" + p1RuntimeManifestSha256 + "')throw new Error('runtime_manifest_embedded_hash_mismatch');";
    code = code + "var manifest=JSON.parse(read(manifestFile));if(String(manifest.schema||'')!='" + p1RuntimeManifestSchema + "'||String(manifest.candidate_id||'')!='Cavity_TEM_Light_v1_2_0_R10_DEV01'||String(manifest.inventory_profile||'')!='" + p1RuntimeInventoryProfile + "'||manifest.manifest_self_included!==false||String(manifest.manifest_self_relative_path||'')!='" + p1RuntimeManifestName + "'||!Array.isArray(manifest.files)||Number(manifest.file_count)!==manifest.files.length)throw new Error('runtime_manifest_schema_mismatch');var declared={},expectedDirs={},last='',i,r,rel,parts,j,file;for(i=0;i<manifest.files.length;i++){r=manifest.files[i];rel=String(r.path||'');var rb=Number(r.bytes);if(!safeRel(rel)||rel=='" + p1RuntimeManifestName + "'||declared[rel]||(last!=''&&rel<=last)||!isSha(r.sha256)||!isFinite(rb)||Math.floor(rb)!=rb||rb<0)throw new Error('runtime_manifest_record_invalid');declared[rel]=r;last=rel;parts=rel.split('/');for(j=1;j<parts.length;j++)expectedDirs[parts.slice(0,j).join('/')]=1;file=new F(companion,rel.replace(/\\//g,F.separator));var prefixPath=String(companion.getCanonicalPath())+F.separator;if(!plain(file)||String(file.getCanonicalPath()).indexOf(prefixPath)!=0||Number(file.length())!==rb||sha(file)!=String(r.sha256))throw new Error('runtime_file_mismatch_'+rel);}var seen={},seenDirs={};function walk(dir,prefix){var entries=dir.listFiles();if(entries==null)throw new Error('runtime_inventory_unreadable');for(var k=0;k<entries.length;k++){var e=entries[k],name=String(e.getName()),rr=prefix==''?name:prefix+'/'+name;if(rr=='" + p1RuntimeManifestName + "')continue;if(Files.isSymbolicLink(e.toPath())||String(e.getAbsolutePath())!=String(e.getCanonicalPath()))throw new Error('runtime_link_or_noncanonical_'+rr);if(e.isDirectory()){seenDirs[rr]=1;walk(e,rr);}else if(e.isFile()){if(!declared[rr])throw new Error('runtime_extra_'+rr);seen[rr]=1;}else throw new Error('runtime_nonregular_'+rr);}}walk(companion,'');for(rel in declared)if(!seen[rel])throw new Error('runtime_missing_'+rel);for(rel in seenDirs)if(!expectedDirs[rel])throw new Error('runtime_extra_directory_'+rel);for(rel in expectedDirs)if(!seenDirs[rel])throw new Error('runtime_missing_directory_'+rel);";
    code = code + "var config=JSON.parse(read(configFile)),installConfigKeys='binding_record_relative_path|binding_record_schema|bridge_relative_path|candidate_id|created_at|installation_root|python_executable|python_executable_sha256|python_version|runtime_file_count|runtime_inventory_profile|runtime_manifest_relative_path|runtime_manifest_sha256|schema',stagingConfigKeys='binding_record_relative_path|binding_record_schema|bridge_relative_path|candidate_id|campaign_harness_bytes|campaign_harness_relative_path|campaign_harness_sha256|case_assembler_bytes|case_assembler_relative_path|case_assembler_sha256|created_at|implementation_branch|implementation_commit|install_mode|installation_root|pixel_probe_relative_path|public_distribution_ready|python_executable|python_executable_sha256|python_version|runtime_file_count|runtime_inventory_profile|runtime_manifest_relative_path|runtime_manifest_sha256|schema',stagingMode=exactKeys(config,stagingConfigKeys);if(!stagingMode&&!exactKeys(config,installConfigKeys))throw new Error('runtime_config_fields_not_closed');if(String(config.schema||'')!='" + p1RuntimeConfigSchema + "'||String(config.candidate_id||'')!='Cavity_TEM_Light_v1_2_0_R10_DEV01')throw new Error('runtime_config_schema_mismatch');if(!rfc3339Utc(config.created_at)||!/^[0-9]+\\.[0-9]+\\.[0-9]+$/.test(String(config.python_version||'')))throw new Error('runtime_config_time_python_invalid');if(String(config.installation_root||'')!=String(pkg.getCanonicalPath()))throw new Error('runtime_config_installation_root_mismatch');if(String(config.runtime_manifest_sha256||'')!='" + p1RuntimeManifestSha256 + "'||String(config.runtime_inventory_profile||'')!='" + p1RuntimeInventoryProfile + "'||typeof config.runtime_file_count!='number'||Number(config.runtime_file_count)!==manifest.files.length||String(config.runtime_manifest_relative_path||'')!='python_companion/" + p1RuntimeManifestName + "'||String(config.bridge_relative_path||'')!='python_companion/ctl_p1_bridge.py')throw new Error('runtime_config_inventory_mismatch');var expectedRecordName=stagingMode?'campaign_staging_record.json':'install_record.json',expectedRecordSchema=stagingMode?'CTL_P1_FIJI_CAMPAIGN_STAGING_V1':'CTL_P1_INSTALL_RECORD_V2';if(String(config.binding_record_relative_path||'')!=expectedRecordName||String(config.binding_record_schema||'')!=expectedRecordSchema)throw new Error('runtime_config_binding_mode_mismatch');if(stagingMode){if(String(config.install_mode||'')!='STAGING_NOT_PRODUCTION_INSTALLER'||config.public_distribution_ready!==false||!/^[-A-Za-z0-9._\\/]{1,255}$/.test(String(config.implementation_branch||''))||!/^[0-9a-f]{40}$/.test(String(config.implementation_commit||''))||String(config.pixel_probe_relative_path||'')!='campaign_tools/CTL_MASTER_PIXEL_SHA256_V1_INDEPENDENT.js'||String(config.campaign_harness_relative_path||'')!='campaign_tools/P1_FIJI_REAL_HARNESS.ijm'||!isSha(config.campaign_harness_sha256)||typeof config.campaign_harness_bytes!='number'||!isFinite(config.campaign_harness_bytes)||Math.floor(config.campaign_harness_bytes)!=config.campaign_harness_bytes||config.campaign_harness_bytes<=0||String(config.case_assembler_relative_path||'')!='campaign_tools/assemble_prompt1_fiji_case.py'||!isSha(config.case_assembler_sha256)||typeof config.case_assembler_bytes!='number'||!isFinite(config.case_assembler_bytes)||Math.floor(config.case_assembler_bytes)!=config.case_assembler_bytes||config.case_assembler_bytes<=0)throw new Error('runtime_staging_config_invalid');}";
    code = code + "var pythonText=String(config.python_executable||''),pythonLexical=new F(pythonText);if(!pythonLexical.isAbsolute())throw new Error('configured_python_lexically_relative');if(!plain(pythonLexical))throw new Error('configured_python_path_unsafe');var python=pythonLexical.getCanonicalFile();if(!isSha(config.python_executable_sha256)||sha(python)!=String(config.python_executable_sha256))throw new Error('configured_python_invalid');var recordName=String(config.binding_record_relative_path||'');if(!safeRel(recordName)||recordName.indexOf('/')>=0)throw new Error('binding_record_path_invalid');var recordFile=new F(pkg,recordName).getAbsoluteFile();if(!plain(recordFile)||!exactChild(recordFile,pkg,recordName))throw new Error('binding_record_missing');var record=JSON.parse(read(recordFile)),installRecordKeys='bridge_sha256|candidate_id|icon_sha256|install_state|installed_at|package_manifest_sha256|python_executable_sha256|runtime_config_sha256|runtime_file_count|runtime_files|runtime_inventory_profile|runtime_manifest_sha256|schema|toolset_name|toolset_sha256|validation_evidence_external',stagingRecordKeys='candidate_id|campaign_harness_bytes|campaign_harness_relative_path|campaign_harness_sha256|case_assembler_bytes|case_assembler_relative_path|case_assembler_sha256|claim_boundary|classification|implementation_branch|implementation_commit|install_mode|path_safety|pixel_probe_sha256|profile_header_runtime|python_executable_sha256|runtime_config_sha256|runtime_file_count|runtime_files|runtime_inventory_profile|runtime_manifest_sha256|schema|transaction_id';if(!exactKeys(record,stagingMode?stagingRecordKeys:installRecordKeys))throw new Error('binding_record_fields_not_closed');if(String(record.schema||'')!=expectedRecordSchema||String(record.candidate_id||'')!='Cavity_TEM_Light_v1_2_0_R10_DEV01'||String(record.runtime_manifest_sha256||'')!='" + p1RuntimeManifestSha256 + "'||String(record.runtime_inventory_profile||'')!='" + p1RuntimeInventoryProfile + "'||typeof record.runtime_file_count!='number'||Number(record.runtime_file_count)!==manifest.files.length||String(record.runtime_config_sha256||'')!=sha(configFile)||String(record.python_executable_sha256||'')!=String(config.python_executable_sha256)||!Array.isArray(record.runtime_files)||record.runtime_files.length!==manifest.files.length)throw new Error('binding_record_mismatch');for(i=0;i<manifest.files.length;i++){if(String(record.runtime_files[i].path||'')!=String(manifest.files[i].path)||String(record.runtime_files[i].sha256||'')!=String(manifest.files[i].sha256)||Number(record.runtime_files[i].bytes)!==Number(manifest.files[i].bytes))throw new Error('binding_record_inventory_mismatch');}";
    code = code + "if(stagingMode){var cb=record.claim_boundary,tools=new F(pkg,'campaign_tools').getAbsoluteFile(),toolEntries,toolNames=[],probe,assembler,harness;if(String(record.implementation_branch||'')!=String(config.implementation_branch)||String(record.implementation_commit||'')!=String(config.implementation_commit)||String(record.install_mode||'')!=String(config.install_mode)||String(record.classification||'')!='RESTRICTED_LOCAL_CAMPAIGN_EVIDENCE'||!claimBoundaryOk(cb)||!profileRecordOk(record.profile_header_runtime)||!pathSafetyRecordOk(record.path_safety)||!/^[A-Z0-9][A-Z0-9_-]{0,63}$/.test(String(record.transaction_id||''))||String(record.campaign_harness_relative_path||'')!=String(config.campaign_harness_relative_path)||String(record.campaign_harness_sha256||'')!=String(config.campaign_harness_sha256)||Number(record.campaign_harness_bytes)!==Number(config.campaign_harness_bytes)||String(record.case_assembler_relative_path||'')!=String(config.case_assembler_relative_path)||String(record.case_assembler_sha256||'')!=String(config.case_assembler_sha256)||Number(record.case_assembler_bytes)!==Number(config.case_assembler_bytes)||!isSha(record.pixel_probe_sha256))throw new Error('staging_binding_record_mismatch');if(!safeDirectory(tools)||!exactChild(tools,pkg,'campaign_tools'))throw new Error('campaign_tools_directory_invalid');toolEntries=tools.listFiles();if(toolEntries==null)throw new Error('campaign_tools_unreadable');for(i=0;i<toolEntries.length;i++)toolNames.push(String(toolEntries[i].getName()));toolNames.sort();if(toolNames.join('|')!='CTL_MASTER_PIXEL_SHA256_V1_INDEPENDENT.js|P1_FIJI_REAL_HARNESS.ijm|assemble_prompt1_fiji_case.py')throw new Error('campaign_tools_inventory_not_closed');probe=new F(tools,'CTL_MASTER_PIXEL_SHA256_V1_INDEPENDENT.js').getAbsoluteFile();assembler=new F(tools,'assemble_prompt1_fiji_case.py').getAbsoluteFile();harness=new F(tools,'P1_FIJI_REAL_HARNESS.ijm').getAbsoluteFile();if(!plain(probe)||!exactChild(probe,tools,'CTL_MASTER_PIXEL_SHA256_V1_INDEPENDENT.js')||sha(probe)!=String(record.pixel_probe_sha256)||!plain(assembler)||!exactChild(assembler,tools,'assemble_prompt1_fiji_case.py')||Number(assembler.length())!==Number(config.case_assembler_bytes)||sha(assembler)!=String(config.case_assembler_sha256)||!plain(harness)||!exactChild(harness,tools,'P1_FIJI_REAL_HARNESS.ijm')||Number(harness.length())!==Number(config.campaign_harness_bytes)||sha(harness)!=String(config.campaign_harness_sha256))throw new Error('campaign_tools_binding_mismatch');}else{var undeclaredTools=new F(pkg,'campaign_tools'),toolsetRoot=new F(new F(fiji,'macros'),'toolsets').getAbsoluteFile(),toolset,iconHashes,iconNames,iconFile,packageManifest;if(undeclaredTools.exists())throw new Error('production_campaign_tools_not_declared');if(String(record.install_state||'')!='COMMITTED'||!isSha(record.bridge_sha256)||String(record.bridge_sha256)!=sha(bridge)||!isSha(record.package_manifest_sha256)||!isSha(record.toolset_sha256)||String(record.toolset_name||'')!='Cavity_TEM_Light_v1_2_0_R10_DEV01.ijm'||typeof record.validation_evidence_external!='string'||!new F(String(record.validation_evidence_external)).isAbsolute())throw new Error('install_binding_record_mismatch');toolset=new F(toolsetRoot,String(record.toolset_name)).getAbsoluteFile();if(!safeDirectory(toolsetRoot)||!plain(toolset)||!exactChild(toolset,toolsetRoot,String(record.toolset_name))||sha(toolset)!=String(record.toolset_sha256))throw new Error('installed_toolset_binding_mismatch');iconHashes=record.icon_sha256;if(iconHashes==null||!exactKeys(iconHashes,'cavity_add.png|cavity_measure.png|cavity_select.png|cavity_studio.png|cavity_zoom.png'))throw new Error('installed_icon_inventory_not_closed');for(var iconName in iconHashes){if(!Object.prototype.hasOwnProperty.call(iconHashes,iconName))continue;if(!isSha(iconHashes[iconName]))throw new Error('installed_icon_hash_invalid');iconFile=new F(toolsetRoot,iconName).getAbsoluteFile();if(!plain(iconFile)||!exactChild(iconFile,toolsetRoot,iconName)||sha(iconFile)!=String(iconHashes[iconName]))throw new Error('installed_icon_binding_mismatch');}packageManifest=new F(pkg,'package_manifest.sha256.txt').getAbsoluteFile();if(!plain(packageManifest)||!exactChild(packageManifest,pkg,'package_manifest.sha256.txt')||sha(packageManifest)!=String(record.package_manifest_sha256))throw new Error('installed_package_manifest_binding_mismatch');}";
    code = code + "if(!stagingMode&&!rfc3339Utc(record.installed_at))throw new Error('install_record_time_invalid');var tempLex=Files.createTempDirectory('ctl-p1-ijm-').toFile().getAbsoluteFile();if(!safeDirectory(tempLex))throw new Error('temporary_root_invalid');var temp=tempLex.getCanonicalFile(),requestFile=new F(temp,'request.json').getCanonicalFile(),responseFile=new F(temp,'response.json').getCanonicalFile(),stdoutFile=new F(temp,'stdout.txt').getCanonicalFile(),stderrFile=new F(temp,'stderr.txt').getCanonicalFile();if(!exactChild(requestFile,temp,'request.json')||requestFile.exists()||responseFile.exists()||stdoutFile.exists()||stderrFile.exists())throw new Error('temporary_paths_invalid');";
    code = code + "var TX_KEY='CTL.P1.BridgeTransactionV1',ACTIVE_REQUEST_KEY='CTL.P1.ActiveRequestId',ACTIVE_TRANSACTION_KEY='CTL.P1.ActiveTransactionId',op='" + jsEscape(operation) + "',phase='" + jsEscape(phase) + "',token='" + jsEscape(prepareToken) + "',providedContext=JSON.parse('" + jsEscape(contextJson) + "'),parametersText='" + jsEscape(parametersJson) + "',base,tx,parameters,operationInput,payload,requestId,transactionId,terminal=false,bridgeRequested=false,opClass=rt.telemetryOperation(op);";
    code = code + "function pubTarget(){return opClass=='SAVE_REVISION'?'REVISION':(opClass=='EXPORT_RUN'?'RUN':'NONE');}function writeTarget(){return opClass=='SAVE_REVISION'?'REVISION_STAGING':(opClass=='EXPORT_RUN'?'RUN_STAGING':'NONE');}function emit(et,ph,st,j,pa,pt,pr,wa,wt,wr,detail){return rt.telemetryEvent({event_type:et,imp:imp,owner_context:providedContext,request_id:requestId,transaction_id:transactionId,operation:opClass,phase:ph,status:st,journal_state:j,publication_attempted:pa,publication_target_class:pt,publication_result:pr,write_attempted:wa,write_target_class:wt,write_result:wr,detail_code:detail});}function failed(value){if(bridgeRequested){if(phase=='COMMIT'){emit('PUBLICATION_ATTEMPT','COMMIT','FAILED','NOT_APPLICABLE',true,pubTarget(),'FAILED',true,writeTarget(),'FAILED','BRIDGE_PUBLICATION_FAILED');emit('TRANSACTION_PHASE','ROLLBACK','FAILED','FAILED_PARTIAL',false,pubTarget(),'FAILED',false,writeTarget(),'FAILED','BRIDGE_TRANSACTION_FAILED_PARTIAL');}else if(phase=='ABORT'){emit('TRANSACTION_PHASE','ROLLBACK','FAILED','FAILED_PARTIAL',false,pubTarget(),'ROLLED_BACK',false,writeTarget(),'FAILED','BRIDGE_ROLLBACK_FAILED_PARTIAL');}emit('BRIDGE_COMPLETED','COMPLETE','FAILED','NOT_APPLICABLE',false,pubTarget(),'FAILED',false,writeTarget(),'FAILED','BRIDGE_REQUEST_FAILED');}return 'FAIL|'+clean(value);}";
    code = code + "if(phase=='PREPARE'||phase=='EXECUTE'){if(phase=='PREPARE'&&IJ.getProperty(TX_KEY)!=null)throw new Error('bridge_transaction_already_active');parameters=JSON.parse(parametersText);operationInput=rt.operationSnapshot(imp,parameters,op);var activeRequest=IJ.getProperty(ACTIVE_REQUEST_KEY),activeTransaction=IJ.getProperty(ACTIVE_TRANSACTION_KEY);requestId=activeRequest==null?rt.telemetryId():String(activeRequest);transactionId=activeTransaction==null?rt.telemetryId():String(activeTransaction);payload={facade_version:'CTL_P1_FIJI_FACADE_V1',runtime_version:'" + p1RuntimeVersion + "',candidate_version:'1.2.0-R10-DEV01',image_directory:'" + jsEscape(lightImageDir) + "',source_path:'" + jsEscape(sourcePath) + "',operator_id:'" + jsEscape(operatorName) + "',scale_x_nm_px:Number(parameters.scale_x_nm_px),scale_y_nm_px:Number(parameters.scale_y_nm_px),scale_method:String(parameters.scale_method),operation_input:operationInput};base={schema:'CTL_P1_BRIDGE_BOUND_REQUEST_V1',request_id:requestId,transaction_id:transactionId,operation:op,context:providedContext,payload:payload,project_root:'" + jsEscape(lightProjectRoot) + "'};}";
    code = code + "else{var txRaw=IJ.getProperty(TX_KEY);if(txRaw==null)throw new Error('bridge_transaction_missing');tx=JSON.parse(String(txRaw));if(String(tx.schema||'')!='CTL_P1_BRIDGE_TRANSACTION_V1'||String(tx.prepare_token||'')!=token)throw new Error('bridge_transaction_token_mismatch');base=tx.bound_request;if(base==null||String(base.schema||'')!='CTL_P1_BRIDGE_BOUND_REQUEST_V1'||String(base.operation||'')!=op)throw new Error('bridge_transaction_operation_mismatch');if(JSON.stringify(base.context)!=JSON.stringify(providedContext))throw new Error('bridge_transaction_context_mismatch');requestId=String(base.request_id);transactionId=String(base.transaction_id);terminal=true;}";
    code = code + "emit('BRIDGE_REQUESTED',phase=='PREPARE'?'PREPARE':(phase=='COMMIT'?'COMMIT':(phase=='ABORT'?'ROLLBACK':'VALIDATE')),'STARTED','NOT_APPLICABLE',false,pubTarget(),'NOT_ATTEMPTED',false,writeTarget(),'NOT_ATTEMPTED','BRIDGE_REQUEST_BOUND');bridgeRequested=true;var request={schema:'" + p1BridgeRequestSchema + "',request_id:requestId,operation:String(base.operation),phase:phase,technical_preview:true,context:base.context,payload:base.payload,prepare_token:token==''?'NOT_APPLICABLE':token,project_root:String(base.project_root),forbidden_response_roots:[String(base.project_root),String(pkg.getCanonicalPath())],response_policy:{temporary_root:String(temp.getCanonicalPath())}};";
    code = code + "var bytes=new java.lang.String(JSON.stringify(request)+'\\n').getBytes(CS.UTF_8);Files.write(requestFile.toPath(),bytes);if(!plain(requestFile)||!exactChild(requestFile,temp,'request.json'))throw new Error('request_file_unsafe');var requestSha=sha(requestFile),argv=new ArrayList();argv.add(String(python.getCanonicalPath()));argv.add('-I');argv.add('-B');argv.add(String(bridge.getCanonicalPath()));argv.add('--runtime-manifest-sha256');argv.add('" + p1RuntimeManifestSha256 + "');argv.add('--request');argv.add(String(requestFile.getCanonicalPath()));argv.add('--request-sha256');argv.add(requestSha);argv.add('--response');argv.add(String(responseFile.getCanonicalPath()));";
    code = code + "var builder=new PB(argv);builder.directory(pkg);builder.redirectOutput(stdoutFile);builder.redirectError(stderrFile);if(terminal)IJ.setProperty(TX_KEY,null);var process=builder.start(),finished=process.waitFor(900,TimeUnit.SECONDS);if(!finished){process.destroyForcibly();throw new Error('python_timeout');}var exitCode=process.exitValue();if(!plain(responseFile)||!exactChild(responseFile,temp,'response.json'))throw new Error('response_missing_or_unsafe_exit_'+exitCode);var responseSha=sha(responseFile),responseRaw=read(responseFile);if(!plain(responseFile)||sha(responseFile)!=responseSha)throw new Error('response_changed_during_read');if(responseRaw.indexOf('\\r')>=0||responseRaw.charCodeAt(0)==0xfeff)throw new Error('response_encoding_invalid');var response=JSON.parse(responseRaw);if(String(response.schema||'')!='" + p1BridgeResponseSchema + "'||String(response.request_id||'')!=requestId||String(response.operation||'')!=op||String(response.phase||'')!=phase)throw new Error('response_identity_mismatch');if(exitCode!=0||String(response.status||'')!='PASS'||(response.errors||[]).length!=0)return failed(response.errors&&response.errors.length?response.errors[0].code:'BRIDGE_EXIT_'+exitCode);";
    code = code + "var responseToken='';if(phase=='PREPARE'){responseToken=String((response.result||{}).prepare_token||'');if(responseToken=='')throw new Error('prepare_token_missing');IJ.setProperty(TX_KEY,JSON.stringify({schema:'CTL_P1_BRIDGE_TRANSACTION_V1',prepare_token:responseToken,bound_request:base}));emit('TRANSACTION_PHASE','PREPARE','SUCCEEDED','PREPARED',false,pubTarget(),'NOT_ATTEMPTED',false,writeTarget(),'NOT_ATTEMPTED','BRIDGE_TRANSACTION_PREPARED');}else if(phase=='COMMIT'){emit('WRITE_ATTEMPT','COMMIT','SUCCEEDED','NOT_APPLICABLE',false,pubTarget(),'NOT_ATTEMPTED',true,writeTarget(),'COMMITTED','BRIDGE_WRITE_COMMITTED');emit('PUBLICATION_ATTEMPT','COMMIT','SUCCEEDED','NOT_APPLICABLE',true,pubTarget(),'COMMITTED',true,writeTarget(),'COMMITTED','BRIDGE_PUBLICATION_COMMITTED');emit('TRANSACTION_PHASE','COMMIT','SUCCEEDED','COMMITTED',true,pubTarget(),'COMMITTED',true,writeTarget(),'COMMITTED','BRIDGE_TRANSACTION_COMMITTED');}else if(phase=='ABORT'){emit('TRANSACTION_PHASE','ROLLBACK','CANCELLED','ROLLED_BACK',false,pubTarget(),'ROLLED_BACK',false,writeTarget(),'ROLLED_BACK','BRIDGE_TRANSACTION_ROLLED_BACK');}emit('BRIDGE_COMPLETED','COMPLETE','SUCCEEDED','NOT_APPLICABLE',phase=='COMMIT',pubTarget(),phase=='COMMIT'?'COMMITTED':'NOT_ATTEMPTED',phase=='COMMIT',writeTarget(),phase=='COMMIT'?'COMMITTED':'NOT_ATTEMPTED','BRIDGE_REQUEST_COMPLETED');imp.setProperty('CTL.P1.last_bridge_response',responseRaw);imp.setProperty('CTL.P1.last_bridge_response_path',String(responseFile.getCanonicalPath()));return 'PASS|'+responseToken+'|'+String(responseFile.getCanonicalPath());}catch(ex){try{return failed(ex);}catch(telemetryError){return 'FAIL|TELEMETRY_FAIL_CLOSED';}}})();";
    return "" + eval("js",code);
}


function p1RunValidate() {
    contextJson = p1CaptureOperationContext("validate");
    if (contextJson == "") return;
    result = p1BridgeCall("validate","EXECUTE",contextJson,"");
    showStatus("CTL P1 validate: " + result);
}


function p1RunTransactionalOperation(operation) {
    if (!p1RequireScientificWrite(operation)) return;
    contextJson = p1CaptureOperationContext(operation);
    if (contextJson == "") return;
    prepared = p1BridgeCall(operation,"PREPARE",contextJson,"");
    if (!startsWith(prepared,"PASS|")) { showStatus("CTL P1 " + operation + " bloqueado: " + prepared); return; }
    fields = split(prepared,"|");
    if (fields.length < 2 || fields[1] == "") { showStatus("CTL P1 prepare sin token"); return; }
    token = fields[1];
    evt006Barrier = p1AwaitEvt006PrepareSwitch(contextJson);
    if (evt006Barrier != "NOT_ACTIVE") {
        // A harness marker is one-shot and test-only.  Success proves that the
        // EDT really activated B; every failure is also terminal fail-closed.
        // In either case this prepared transaction can only be rolled back.
        aborted = p1BridgeCall(operation,"ABORT",contextJson,token);
        if (evt006Barrier == "SWITCH_VERIFIED") {
            p1AuditStale(contextJson,operation);
            showStatus("CTL P1 " + operation + ": EVT006_SWITCH_VERIFIED_ABORT|" + aborted);
        } else {
            showStatus("CTL P1 " + operation + ": EVT006_BARRIER_FAILED_ABORT|" + evt006Barrier + "|" + aborted);
        }
        return;
    }
    if (!p1ContextStillCurrent(contextJson)) {
        p1BridgeCall(operation,"ABORT",contextJson,token);
        p1AuditStale(contextJson,operation);
        showStatus("CTL P1 " + operation + ": STALE_CONTEXT_CANCELLED");
        return;
    }
    committed = p1BridgeCall(operation,"COMMIT",contextJson,token);
    showStatus("CTL P1 " + operation + ": " + committed);
}


function p1ChooseCombinedAndRun() {
    if (!p1RequireScientificWrite("combined_analysis")) return;
    ids = lightChooseRegistryImages(1);
    if (ids == "") { showStatus("CTL P1 combined_analysis cancelado sin mutaciones."); return; }
    code = "var imp=Packages.ij.WindowManager.getCurrentImage();if(imp!=null)imp.setProperty('CTL.P1.combined_selected_image_ids','" + jsEscape(ids) + "');'OK';";
    eval("js",code);
    p1RunTransactionalOperation("combined_analysis");
}


function p1ChoosePrompt1RevisionRelativePath() {
    if (lightProjectRoot == "" || lightImageId == "") return "ERROR|PROJECT_IMAGE_CONTEXT_MISSING";
    code = "(function(){var F=Packages.java.io.File,Files=Packages.java.nio.file.Files,JOption=Packages.javax.swing.JOptionPane;";
    code = code + "function clean(v){return String(v).replace(/[\\r\\n|]/g,' ');}function same(a,b){return String(a.getCanonicalPath())==String(b.getCanonicalPath());}function plainFile(parent,name){var f=new F(parent,name);return f.isFile()&&!Files.isSymbolicLink(f.toPath())&&same(f.getCanonicalFile().getParentFile(),parent);}";
    code = code + "try{var root=new F('" + jsEscape(lightProjectRoot) + "').getCanonicalFile(),imageDir=new F(new F(root,'images'),'" + jsEscape(lightImageId) + "').getCanonicalFile(),sessions=new F(imageDir,'roi_sessions').getCanonicalFile();if(!root.isDirectory()||!imageDir.isDirectory()||!sessions.isDirectory()||Files.isSymbolicLink(root.toPath())||Files.isSymbolicLink(imageDir.toPath())||Files.isSymbolicLink(sessions.toPath())||!same(imageDir.getParentFile(),new F(root,'images').getCanonicalFile())||!same(sessions.getParentFile(),imageDir))throw new Error('canonical_revision_root_invalid');";
    code = code + "var entries=sessions.listFiles(),names=[],i,e,c,n;if(entries!=null)for(i=0;i<entries.length;i++){e=entries[i];if(!e.isDirectory()||Files.isSymbolicLink(e.toPath()))continue;c=e.getCanonicalFile();n=String(e.getName());if(!same(c.getParentFile(),sessions)||n.indexOf('REV_')!=0||String(c.getName())!=n)continue;if(!plainFile(c,'COMPLETE')||!plainFile(c,'REVISION_SHA256.txt')||!plainFile(c,'revision_manifest.json')||!plainFile(c,'revision_metadata.json')||!plainFile(c,'cavity_rois.zip'))continue;names.push(n);}names.sort().reverse();if(names.length==0)return 'ERROR|NO_VERIFIED_P1_REVISION_CANDIDATES';var selected=JOption.showInputDialog(Packages.ij.IJ.getInstance(),'Selecciona una revision P1 verificada','Cargar revision P1',JOption.PLAIN_MESSAGE,null,names,names[0]);if(selected==null)return '';selected=String(selected);if(names.indexOf(selected)<0)throw new Error('revision_selection_not_listed');return 'images/" + jsEscape(lightImageId) + "/roi_sessions/'+selected;}catch(ex){return 'ERROR|'+clean(ex);}})();";
    return "" + eval("js",code);
}


function p1RunLoadRevision() {
    if (!p1RequireScientificWrite("cargar revision verificada")) return;
    selectedRelative = p1ChoosePrompt1RevisionRelativePath();
    if (selectedRelative == "") {
        showStatus("CTL P1 load_revision cancelado sin mutaciones.");
        return;
    }
    if (startsWith(selectedRelative,"ERROR|")) {
        showStatus("CTL P1 load_revision bloqueado: " + selectedRelative);
        return;
    }
    p1LoadRevisionRelativePath = selectedRelative;
    p1LoadWorkingStateId = "WORKING_" + substring(replace(lightUuid(),"-",""),0,16);
    contextJson = p1CaptureOperationContext("load_revision");
    if (contextJson == "") {
        p1LoadRevisionRelativePath = "";
        p1LoadWorkingStateId = "";
        return;
    }
    bridgeResult = p1BridgeCall("load_revision","EXECUTE",contextJson,"");
    if (!startsWith(bridgeResult,"PASS|")) {
        p1LoadRevisionRelativePath = "";
        p1LoadWorkingStateId = "";
        showStatus("CTL P1 load_revision bloqueado: " + bridgeResult);
        return;
    }
    code = "(function(){try{var IJ=Packages.ij.IJ,rt=IJ.getProperty('CTL.P1.Runtime'),imp=Packages.ij.WindowManager.getCurrentImage();if(rt==null||imp==null)throw new Error('runtime_or_image_missing');var raw=imp.getProperty('CTL.P1.last_bridge_response');if(raw==null||String(raw)=='')throw new Error('verified_bridge_response_missing');var loaded=rt.applyVerifiedRevisionLoad(imp,String(raw));return 'PASS\\t'+String(loaded.working_state_id)+'\\t'+String(loaded.revision_id)+'\\t'+String(loaded.revision_uid)+'\\t'+String(loaded.revision_manifest_sha256)+'\\t'+String(loaded.roi_count)+'\\t'+String(loaded.selected_is_current)+'\\t'+String(loaded.current_run_binding_status);}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n\\t|]/g,' ');}})();";
    applied = "" + eval("js",code);
    p1LoadRevisionRelativePath = "";
    p1LoadWorkingStateId = "";
    if (startsWith(applied,"ERROR|")) {
        showStatus("CTL P1 load_revision no aplicado: " + applied);
        return;
    }
    fields = split(applied,"\t");
    if (fields.length != 8 || fields[0] != "PASS" || fields[1] == "") {
        showStatus("CTL P1 load_revision respuesta aplicada invalida.");
        return;
    }
    p1WorkingStateId = fields[1];
    lightCurrentRevision = "";
    lightCurrentRunId = "";
    storedGeneration = parseFloat(p1ImageProperty("CTL.P1.generation_token"));
    if (!isNaN(storedGeneration) && storedGeneration >= 1) p1GenerationToken = floor(storedGeneration);
    storedSelection = parseFloat(p1ImageProperty("CTL.P1.selection_revision"));
    if (!isNaN(storedSelection) && storedSelection >= 0) p1SelectionRevision = floor(storedSelection);
    lightInvalidateAnalysisCache();
    p1StampImageContext();
    showAllRois();
    showStatus("CTL P1 revision " + fields[2] + " cargada en working state " + fields[1] + "; RUN desligado solo en memoria; escrituras de proyecto=0.");
}


function p1LegacyWriteBlocked(actionText) {
    showMessage("Escritura legacy bloqueada", "CTL P1 no ejecuta " + actionText + " sobre el descriptor/proyecto schema 1. No existe fallback de reparacion o migracion en Prompt 1.");
}


function p1AutoRun() {
    lightInvalidateAnalysisCache();usePanelsAsMask=0;v4ProjectLoaded=0;
    if(nImages()>0){updateScaleMaybe();run("ROI Manager...");p1StampImageContext();p1InstallInteractionListeners(0);lightInteractivePushState(lightInteractiveMode);}
    lightShowPanel();showStatus("Cavity TEM Light Prompt 1 activo; carga/reparacion/escritura legacy automatica=0.");
}


function p1ResolveSourcePathReadOnly() {
    if(lightProjectRoot==""||lightImageId==""||lightSourceSha256==""||lengthOf(lightSourceSha256)!=64){showMessage("Fuente no disponible","Falta el contexto cerrado project/image/source_sha256.");return "";}
    code="(function(){try{var F=Packages.java.io.File,Files=Packages.java.nio.file.Files,Link=Packages.java.nio.file.LinkOption,Sys=Packages.java.lang.System,isWindows=String(Sys.getProperty('os.name')).toLowerCase().indexOf('windows')>=0,K=null,WB=null,SI=null,DW=null;";
    code=code+"function same(a,b){return String(a.getCanonicalPath())==String(b.getCanonicalPath());}function req(c,m){if(!c)throw new Error(m);}function safeNode(f,leaf){var absolute=f.getAbsoluteFile(),canonical=f.getCanonicalFile(),current=absolute,attrs,handle=null,info;req(absolute.exists()&&String(absolute.getAbsolutePath())===String(canonical.getAbsolutePath()),'noncanonical_node');while(current!=null){req(!Files.isSymbolicLink(current.toPath()),'symbolic_link');if(isWindows){if(K==null){K=Packages.com.sun.jna.platform.win32.Kernel32.INSTANCE;WB=Packages.com.sun.jna.platform.win32.WinBase;SI=Packages.com.sun.jna.platform.win32['WinBase$FILE_STANDARD_INFO'];DW=Packages.com.sun.jna.platform.win32['WinDef$DWORD'];}attrs=Number(K.GetFileAttributes(String(current.getAbsolutePath())));req(attrs>=0&&(attrs&1024)==0,'reparse_point');}current=current.getParentFile();}if(leaf){req(absolute.isFile(),'source_not_regular');if(isWindows){handle=K.CreateFile(String(absolute.getAbsolutePath()),0,7,null,3,35651584,null);try{req(handle!=null&&!WB.INVALID_HANDLE_VALUE.equals(handle),'source_handle');info=new SI();req(K.GetFileInformationByHandleEx(handle,1,info.getPointer(),new DW(info.size())),'source_identity');info.read();req(Number(info.NumberOfLinks)===1,'source_hardlink');}finally{if(handle!=null&&!WB.INVALID_HANDLE_VALUE.equals(handle))K.CloseHandle(handle);}}else req(Number(Files.getAttribute(absolute.toPath(),'unix:nlink',Link.NOFOLLOW_LINKS))===1,'source_hardlink');}else req(absolute.isDirectory(),'directory_not_plain');return canonical;}";
    code=code+"var root=safeNode(new F('"+jsEscape(lightProjectRoot)+"'),false),images=safeNode(new F(root,'images'),false),image=safeNode(new F(images,'"+jsEscape(lightImageId)+"'),false),source=safeNode(new F(image,'source'),false);req(same(images.getParentFile(),root)&&same(image.getParentFile(),images)&&same(source.getParentFile(),image),'project_local_source_layout');var entries=source.listFiles(),candidate=null,count=0;req(entries!=null,'source_directory_unreadable');for(var i=0;i<entries.length;i++){var e=entries[i],name=String(e.getName()).toLowerCase();if(!/\\.(dm3|dm4)$/.test(name))continue;e=safeNode(e,true);req(same(e.getParentFile(),source),'source_parent');candidate=e;count++;}req(count===1,'source_candidate_count_'+count);return 'OK|'+String(candidate.getCanonicalPath());}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}})();";
    resolved=""+eval("js",code);if(startsWith(resolved,"ERROR|")){showMessage("Fuente no disponible","La copia controlada images/<image_id>/source fue rechazada: "+resolved);return "";}
    fields=split(resolved,"|");if(fields.length!=2||fields[0]!="OK"){showMessage("Fuente no disponible","Respuesta invalida del resolvedor local cerrado.");return "";}
    candidate=normalizeStoredPath(fields[1]);actualSha=IJ.checksum("SHA-256 file",candidate);if(actualSha!=lightSourceSha256){showMessage("Integridad bloqueada","El unico DM3/DM4 de la copia controlada no coincide con source_sha256.");return "";}
    return candidate;
}


function p1OpenProjectReadOnly() {
    selectedPath=File.openDialog("Selecciona cavity_light_project.tsv (solo lectura P1)");
    if(selectedPath=="")return;
    selectedPath=normalizeStoredPath(selectedPath);
    if(File.getName(selectedPath)!=lightProjectFileName){showMessage("Archivo rechazado","Prompt 1 exige seleccionar exactamente "+lightProjectFileName+". No busca ni repara descriptores legacy.");return;}
    if(lightProjectDescriptorValid(selectedPath,"","")==0){showMessage("Proyecto invalido","El descriptor schema 1 no supera la validacion de lectura.");return;}
    if(!lightPrepareProjectSwitch())return;
    if(lightLoadProjectFile(selectedPath)==0)return;
    imagesPath=lightJoin(lightProjectRoot,"images");registryPath=lightJoin(lightProjectRoot,lightRegistryFileName);
    if(!File.exists(imagesPath)||!File.exists(registryPath)){failedRoot=lightProjectRoot;lightClearProjectState();showMessage("Proyecto incompleto","Prompt 1 no crea ni repara la estructura schema 1. Faltan images o images.tsv en:\n"+failedRoot);return;}
    showMessage("Proyecto abierto en solo lectura","Proyecto: "+lightProjectName+"\nMuestra: "+sampleName+"\nCondicion: "+experimentalCondition+"\nRaiz: "+lightProjectRoot+"\n\nNo se ha escrito descriptor, registro, log ni revision schema 1.");
    lightShowPanel();
}


function p1OpenRegisteredImageReadOnly(id,installListeners) {
    imagesRoot=lightJoin(lightProjectRoot,"images");canonicalImageDir=lightNormalizeDir(lightJoin(imagesRoot,id));meta=lightJoin(canonicalImageDir,lightImageMetadataFileName);
    if(!File.exists(meta)){showMessage("Registro incompleto","No existe: "+meta+"\nPrompt 1 no lo reconstruye.");return 0;}
    lightImageId=id;lightImageDir=canonicalImageDir;
    if(lightReadImageMetadata()==0)return 0;
    expectedProjectId=lightProjectId;expectedProjectUid=lightProjectUid;expectedImageId=lightImageId;expectedSha=lightSourceSha256;expectedRoot=lightProjectRoot;expectedImageDir=lightImageDir;
    resolvedPath=p1ResolveSourcePathReadOnly();if(resolvedPath=="")return 0;
    actualSha=IJ.checksum("SHA-256 file",resolvedPath);if(actualSha!=expectedSha){showMessage("Integridad bloqueada","La fuente local controlada no coincide con source_sha256.");return 0;}
    run("ROI Manager...");if(roiManager("count")>0){if(!getBoolean("Limpiar el ROI Manager antes de abrir la imagen?","Limpiar solo memoria","Cancelar"))return 0;roiManager("reset");}
    run("Bio-Formats Importer","open=["+lightEscapeRunPath(resolvedPath)+"] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");if(nImages()<=0)return 0;if(!lightValidateSingle2D())return 0;
    sx=lightKvNumber(meta,"active_scale_x_nm_px",lightOriginalScaleNmX);sy=lightKvNumber(meta,"active_scale_y_nm_px",lightOriginalScaleNmY);if(sx>0&&sy>0){setVoxelSize(sx,sy,1,"nm");updateScaleMaybe();}
    imageFileName=File.getName(resolvedPath);imageDirectory=normalizeStoredPath(File.getDirectory(resolvedPath));imageChecksum=expectedSha;montageId=expectedImageId;sourceFirst=imageFileName;sourceLast=imageFileName;sourceImageList=imageFileName;
    lightProjectId=expectedProjectId;lightProjectUid=expectedProjectUid;lightImageId=expectedImageId;lightSourceSha256=expectedSha;lightProjectRoot=expectedRoot;lightImageDir=expectedImageDir;lightSourcePath=resolvedPath;lightSourceStoredPath=resolvedPath;lightCopySource=0;lightCurrentRevision="";lightCurrentRunId="";projectConfigured=1;lightProjectLoaded=1;v4ProjectLoaded=0;
    p1ResetImageScopedRuntimeGlobals();setMetadataImageProperties();updateSessionMetadataRoi();
    if(!p1BindExpectedPixelFreezeReadOnly()){close();return 0;}
    stampOk=p1StampImageContext();verifyStatus="NOT_VERIFIED";if(stampOk)verifyStatus=p1VerifyMaster();
    if(!stampOk||verifyStatus!="VERIFIED"){showMessage("Master P1 no verificado","La imagen se cierra sin guardar porque source/master no superan la verificacion independiente.");close();return 0;}
    if(installListeners==1)p1InstallInteractionListeners(0);
    showStatus("Imagen abierta en memoria; escrituras/reparaciones/revision legacy=0.");lightShowPanel();return 1;
}


function p1SelectProjectImageReadOnly(installListeners) {
    if(lightProjectLoaded!=1){showMessage("Sin proyecto","Abra primero un descriptor schema 1 con la ruta de solo lectura Prompt 1.");return 0;}
    if(lightRegistryHasDataRows()==0){showMessage("Sin imagenes seleccionables","images.tsv no contiene filas utilizables. Prompt 1 no ejecuta reconstruccion automatica.");return 0;}
    id=lightChooseRegistryImages(0);if(id=="")return 0;
    return p1OpenRegisteredImageReadOnly(id,installListeners);
}


function p1SelectProjectImageTwoPhase() {
    if (!p1EnsureRuntime()) { showStatus("CTL P1 cambio bloqueado: runtime ausente."); return; }
    if (nImages() <= 0) { p1SelectProjectImageReadOnly(1); return; }
    p1StampImageContext();
    oldId = "" + eval("js","var imp=Packages.ij.WindowManager.getCurrentImage();imp==null?'':String(imp.getID());");
    code = "(function(){try{var rt=Packages.ij.IJ.getProperty('CTL.P1.Runtime');return String(rt.prepareImageSwitch(Packages.ij.WindowManager.getCurrentImage()));}catch(ex){return 'ERROR|'+String(ex).replace(/[\\r\\n|]/g,' ');}})();";
    token = "" + eval("js",code);
    if (startsWith(token,"ERROR|")) { showStatus("CTL P1 cambio bloqueado: " + token); return; }
    p1ResetExpectedPixelBindingGlobals();
    opened = p1SelectProjectImageReadOnly(0);
    newId = "" + eval("js","var imp=Packages.ij.WindowManager.getCurrentImage();imp==null?'':String(imp.getID());");
    if (opened != 1 || newId == oldId || newId == "") {
        code = "var rt=Packages.ij.IJ.getProperty('CTL.P1.Runtime');String(rt.cancelImageSwitch('" + jsEscape(token) + "'));";
        result = "" + eval("js",code);
        showStatus("CTL P1 cambio de imagen: " + result);
        return;
    }
    p1ImageUid="";p1AnalysisSessionId="";p1AnalysisSessionUid="";p1WorkingStateId="";p1GenerationToken=1;p1SelectionRevision=0;
    p1StampImageContext();
    code = "var rt=Packages.ij.IJ.getProperty('CTL.P1.Runtime');String(rt.commitImageSwitch('" + jsEscape(token) + "',Packages.ij.WindowManager.getCurrentImage()));";
    result = "" + eval("js",code);
    showStatus("CTL P1 cambio de imagen: " + result);
}


function p1ConfirmImageScaleInMemory() {
    if(!p1RequireScientificWrite("confirmar escala"))return;
    if(!updateScaleMaybe()){showMessage("Escala no valida","No existe calibracion fisica verificable.");return;}
    msg="Escala detectada: "+d2s(nmPerPixelX,12)+" x "+d2s(nmPerPixelY,12)+" nm/px\n\nConfirmar solo en el working state Prompt 1?";if(!getBoolean(msg,"Confirmar en memoria","Cancelar"))return;
    lightScaleConfirmed=1;if(lightScaleOrigin=="bioformats_metadata")lightScaleOrigin="bioformats_metadata_confirmed";scaleDefined=1;updateSessionMetadataRoi();
    code="var imp=Packages.ij.WindowManager.getCurrentImage();imp.setProperty('CTL.P1.scale_x_nm_px','"+d2s(nmPerPixelX,15)+"');imp.setProperty('CTL.P1.scale_y_nm_px','"+d2s(nmPerPixelY,15)+"');imp.setProperty('CTL.P1.scale_method','BIOFORMATS_CONFIRMED_V1');'OK';";eval("js",code);p1StampImageContext();showStatus("Escala confirmada en memoria; schema 1 sin cambios.");
}


function p1UseWholeImageInMemory() {
    if(!p1RequireScientificWrite("definir area"))return;
    if(!getBoolean("Confirmar toda la imagen como material observable valido en el working state?","Confirmar en memoria","Cancelar"))return;
    lightUseWholeImage=1;syncAllObjects(0);updateSessionMetadataRoi();p1StampImageContext();showStatus("Area completa aplicada en memoria; schema 1 sin cambios.");
}


function p1DefineSurfaceInMemory() {
    if(!p1RequireScientificWrite("definir superficie"))return;
    if(lightImageMode!="with_surface"){if(!getBoolean("Cambiar a modo con superficie solo en el working state?","Cambiar en memoria","Cancelar"))return;lightImageMode="with_surface";excludeNegativeDepth=1;}
    defineSurfaceReference();updateSessionMetadataRoi();p1StampImageContext();showStatus("Superficie aplicada en memoria; schema 1 sin cambios.");
}


function p1ToggleLabelsInMemory() {
    showRoiLabels=1-showRoiLabels;lightInteractivePushState(lightInteractiveMode);showAllRois();updateSessionMetadataRoi();p1StampImageContext();lightRefreshPanel();
}


function p1FinalizeInteractiveActiveDiameterInMemory() {
    if(!p1RequireScientificWrite("confirmar diametro activo"))return;
    previousMode=lightInteractiveMode;if(lightInteractivePullActiveDiameter()==0)return;updateSessionMetadataRoi();lightInteractivePushState(previousMode);p1StampImageContext();lightRefreshPanel();showStatus("Diametro activo confirmado en memoria; schema 1 sin cambios.");
}


function p1UpdateResizeStepInMemory() {
    allowed=p1RequireScientificWrite("actualizar sensibilidad");
    code="(function(){var IJ=Packages.ij.IJ,v=IJ.getProperty('CTL.P1.pending_resize_step_nm');IJ.setProperty('CTL.P1.pending_resize_step_nm',null);return v==null?'':String(v);})();";
    raw=""+eval("js",code);
    if(!allowed)return;
    value=parseFloat(raw);
    if(isNaN(value)||value<lightInteractiveResizeMinNm||value>lightInteractiveResizeMaxNm){showMessage("Sensibilidad rechazada","El valor pendiente no pertenece al rango cerrado permitido.");return;}
    lightInteractiveResizeStepNm=value;lightInteractiveSaveResizePreference();lightInteractivePushState(lightInteractiveMode);updateSessionMetadataRoi();p1StampImageContext();lightRefreshPanel();showStatus("Sensibilidad aplicada en memoria; preferencia y schema 1 sin cambios.");
}


function p1SetScaleNumerically() {
    if (!p1RequireScientificWrite("cambiar escala X/Y")) return;
    updateScaleMaybe();
    Dialog.create("Escala X/Y Prompt 1");
    Dialog.addNumber("scale_x_nm_px:",nmPerPixelX,12,"nm/px");
    Dialog.addNumber("scale_y_nm_px:",nmPerPixelY,12,"nm/px");
    Dialog.addString("Evidencia/origen:","manual_xy_independent",40);
    Dialog.show();
    sx=Dialog.getNumber();sy=Dialog.getNumber();evidence=Dialog.getString();
    if (!(sx>0) || !(sy>0) || evidence=="") { showMessage("Escala bloqueada","X e Y positivas y evidencia no vacia son obligatorias. No se fuerza isotropia."); return; }
    setVoxelSize(sx,sy,1,"nm");updateScaleMaybe();lightScaleConfirmed=1;lightScaleOrigin=evidence;scaleDefined=1;
    code="var imp=Packages.ij.WindowManager.getCurrentImage();imp.setProperty('CTL.P1.scale_x_nm_px','"+d2s(sx,15)+"');imp.setProperty('CTL.P1.scale_y_nm_px','"+d2s(sy,15)+"');imp.setProperty('CTL.P1.scale_method','MANUAL_XY_INDEPENDENT_V1');imp.setProperty('CTL.P1.scale_evidence','"+jsEscape(evidence)+"');'OK';";eval("js",code);
    syncAllObjects(0);updateSessionMetadataRoi();p1StampImageContext();showStatus("Escala X/Y independiente aplicada; working state queda DIRTY_UNREVIEWED.");
}


function p1CalibrateScaleFromLine() {
    if (!p1RequireScientificWrite("calibrar escala por linea")) return;
    updateScaleMaybe();oldX=nmPerPixelX;oldY=nmPerPixelY;
    setTool("line");
    if (!waitForUserSafe("Calibrar eje","Dibuja una referencia horizontal o vertical. Una linea oblicua no resuelve X/Y y se rechazara.")) return;
    getLine(x1,y1,x2,y2,lw);if(x1==-1)return;
    dx=abs(x2-x1);dy=abs(y2-y1);epsilon=1e-6;
    if (dx>epsilon && dy>epsilon) { showMessage("Evidencia anisotropa insuficiente","Una referencia oblicua aporta una ecuacion para dos escalas. CTL P1 no inventa X/Y ni fuerza isotropia."); return; }
    pixels=max2(dx,dy);if(!(pixels>0))return;
    known=getNumber("Longitud real del eje (nm):",50);if(!(known>0))return;
    axisEvidence=getString("Evidencia independiente del eje conservado:","metadata_Bio-Formats_verificada");if(axisEvidence=="")return;
    sx=oldX;sy=oldY;orientation=0;
    if(dx>epsilon){sx=known/dx;orientation=0;}else{sy=known/dy;orientation=90;}
    if(!(sx>0)&&!(sy>0)){showMessage("Escala bloqueada","El eje no medido carece de evidencia valida.");return;}
    setVoxelSize(sx,sy,1,"nm");updateScaleMaybe();scaleDefined=1;lightScaleConfirmed=1;lightScaleOrigin="ANISOTROPIC_AXIS_V1";
    code="var imp=Packages.ij.WindowManager.getCurrentImage();imp.setProperty('CTL.P1.scale_x_nm_px','"+d2s(sx,15)+"');imp.setProperty('CTL.P1.scale_y_nm_px','"+d2s(sy,15)+"');imp.setProperty('CTL.P1.scale_method','ANISOTROPIC_AXIS_V1');imp.setProperty('CTL.P1.scale_axis_orientation_deg','"+orientation+"');imp.setProperty('CTL.P1.scale_axis_evidence','"+jsEscape(axisEvidence)+"');'OK';";eval("js",code);
    syncAllObjects(0);updateSessionMetadataRoi();p1StampImageContext();showStatus("Calibracion ANISOTROPIC_AXIS_V1 aplicada sin forzar isotropia.");
}


function p1FinalizeInteractiveEdit() {
    if (!p1RequireScientificWrite("confirmar edicion interactiva")) return;
    lightFinalizeInteractiveEdit();
    p1SelectionRevision++;
    p1StampImageContext();
}


function p1OpenDmAndRegister() { p1LegacyWriteBlocked("registro/importacion de DM3/DM4 legacy"); }
function p1RegisterActiveImage() { p1LegacyWriteBlocked("registro de imagen activa legacy"); }
function p1GuardedAddCavityAtCursor() { if (p1RequireScientificWrite("anadir cavidad")) addCavityAtCursor(); }
function p1GuardedMeasureCavityByDrag() { if (p1RequireScientificWrite("medir cavidad")) measureCavityByDrag(); }
function p1GuardedDeleteSelected() { if (p1RequireScientificWrite("borrar seleccion")) deleteSelectedManagedRoi(); }
function p1GuardedUndo() { if (p1RequireScientificWrite("deshacer")) undoLastAddOrDelete(); }
function p1SetActiveDiameterInMemory() {
    if (p1RequireScientificWrite("fijar diametro activo")) lightSetActiveDiameter();
}
function p1TakeDiameterFromSelectedInMemory() {
    if (p1RequireScientificWrite("tomar diametro de seleccion")) takeDiameterFromSelected();
}
function p1GuardedSelectOrForceAddAtCursor() {
    getCursorLoc(p1SelectX, p1SelectY, p1SelectZ, p1SelectFlags);
    if ((p1SelectFlags & 1) != 0 &&
        !p1RequireScientificWrite("anadir cavidad con Shift+clic")) return;
    selectOrForceAddAtCursor();
}


// =============================================================================
// CAVITY TEM LIGHT 1.1.1 R9 - FOCUSED WORKFLOW
// Compatible con proyectos schema 1 y revisiones ROI guardadas por R5.
// =============================================================================
// R6: numeric predicates return explicit 0/1 values. File.* and eval(...)
// are never returned directly from a user-defined function. The create-project
// flow can safely complete the empty partial skeleton left by the R2 interruption.

macro "AutoRun" { p1AutoRun(); }
macro "Cavity Light: panel principal" { lightShowPanel(); }
macro "Cavity Light: crear proyecto" { p1LegacyWriteBlocked("creacion de proyecto schema 1"); }
macro "Cavity Light: abrir proyecto" { p1OpenProjectReadOnly(); }
macro "Cavity Light: abrir DM3/DM4 y registrar" { p1OpenDmAndRegister(); }
macro "Cavity Light: registrar imagen activa" { p1RegisterActiveImage(); }
macro "Cavity Light: seleccionar imagen del proyecto" { p1SelectProjectImageTwoPhase(); }
macro "Cavity Light: configurar freezes P1 read-only" { p1ConfigureExpectedPixelFreezeRootReadOnly(); }
macro "Cavity Light: ligar y verificar freeze P1 actual" { p1BindAndVerifyExpectedPixelFreezeReadOnly(); }
macro "Cavity Light: configurar imagen" { p1LegacyWriteBlocked("configuracion persistente de imagen legacy"); }
macro "Cavity Light: informacion actual" { lightShowCurrentInfo(); }
macro "Cavity Light: aceptar escala Bio-Formats" { p1ConfirmImageScaleInMemory(); }
macro "Cavity Light: verificar master P1" { p1VerifyMasterReadOnly(); }
macro "Cavity Light: introducir escala nm/px" { p1SetScaleNumerically(); }
macro "Cavity Light: calibrar escala con linea" { p1CalibrateScaleFromLine(); }
macro "Cavity Light: verificar escala" { lightVerifyScale(); }
macro "Cavity Light: usar toda la imagen como area" { p1UseWholeImageInMemory(); }
macro "Cavity Light: anadir area valida" { if(p1RequireScientificWrite("anadir area"))lightAddAnalysisMasks(); }
macro "Cavity Light: anadir zona excluida" { if(p1RequireScientificWrite("anadir exclusion"))addExclusionRoi(); }
macro "Cavity Light: definir superficie" { p1DefineSurfaceInMemory(); }
macro "Cavity Light: configurar bandas" { p1LegacyWriteBlocked("configuracion persistente de bandas legacy"); }
macro "Cavity Light: seleccionar clase de cavidad" { if(p1RequireScientificWrite("cambiar clase"))chooseActiveCavityClass(); }
macro "Cavity Light: medir diametro y crear cavidad" { activateMeasureTool(); }
macro "Cavity Light: anadir con diametro activo" { activateAddTool(); }
macro "Cavity Light: fijar diametro activo" { p1SetActiveDiameterInMemory(); }
macro "Cavity Light: registrar elipse seleccionada" { if(p1RequireScientificWrite("registrar elipse"))lightAddEllipseCavityFromSelection(); }
macro "Cavity Light: tomar diametro de seleccionada" { p1TakeDiameterFromSelectedInMemory(); }
macro "Cavity Light: seleccionar/editar" { activateSelectTool(); }
macro "Cavity Light: editar seleccionada numericamente" { if(p1RequireScientificWrite("editar seleccion"))editSelectedCavityNumerically(); }
macro "Cavity Light: incluir/excluir seleccionada" { if(p1RequireScientificWrite("cambiar inclusion"))toggleSelectedInclusion(); }
macro "Cavity Light: borrar seleccionada" { p1GuardedDeleteSelected(); }
macro "Cavity Light: deshacer ultima accion" { p1GuardedUndo(); }
macro "Cavity Light: buscar duplicados" { if(p1RequireScientificWrite("actualizar duplicados"))scanAllDuplicates(1); }
macro "Cavity Light: dibujar dislocaciones" { if(p1RequireScientificWrite("dibujar dislocacion"))addLinearFeature("dislocation"); }
macro "Cavity Light: dibujar bordes de grano" { if(p1RequireScientificWrite("dibujar borde"))addLinearFeature("grain_boundary"); }
macro "Cavity Light: dibujar interfaces" { if(p1RequireScientificWrite("dibujar interfaz"))addLinearFeature("interface"); }
macro "Cavity Light: guardar nueva revision" { p1QueueCommand("save_revision","Cavity Light P1 internal: guardar revision",1); }
macro "Cavity Light: cargar revision" { p1QueueCommand("load_revision","Cavity Light P1 internal: cargar revision",1); }
macro "Cavity Light: validar imagen" { p1QueueCommand("validate","Cavity Light P1 internal: validar",0); }
macro "Cavity Light: exportar imagen actual" { p1QueueCommand("export_run","Cavity Light P1 internal: exportar RUN",1); }
macro "Cavity Light: calcular y exportar resultados" { p1QueueCommand("export_run","Cavity Light P1 internal: exportar RUN",1); }
macro "Cavity Light: analisis combinado" { p1QueueCommand("combined_analysis","Cavity Light P1 internal: combinado",1); }
macro "Cavity Light: ajustes" { p1LegacyWriteBlocked("ajustes persistentes legacy"); }
macro "Cavity Light: alternar etiquetas" { p1ToggleLabelsInMemory(); }
macro "Cavity Light: cambiar modo de color" { chooseDisplayMode(); }
macro "Cavity Light: sincronizar seleccionada" { if(p1RequireScientificWrite("sincronizar seleccion"))syncSelectedObject(1); }
macro "Cavity Light: actualizar ROIs" { if(p1RequireScientificWrite("actualizar ROIs")){syncAllObjects(1);restyleAllRois();showAllRois();} }
macro "Cavity Light: ayuda" { lightShowHelp(); }
macro "Cavity Light: confirmar edicion interactiva" { p1FinalizeInteractiveEdit(); }
macro "Cavity Light: confirmar diametro activo interactivo" { p1FinalizeInteractiveActiveDiameterInMemory(); }
macro "Cavity Light: actualizar sensibilidad interactiva" { p1UpdateResizeStepInMemory(); }
macro "Cavity Light: autodiagnostico R9" { p1LegacyWriteBlocked("autodiagnostico R9 con escritores legacy"); }
macro "Cavity Light: reparar contexto de proyecto" { p1LegacyWriteBlocked("reparacion de contexto legacy"); }
macro "Cavity Light: reparar registro de imagenes" { p1LegacyWriteBlocked("reparacion de images.tsv legacy"); }

macro "Cavity Light P1 internal: validar" { p1RunValidate(); }
macro "Cavity Light P1 internal: guardar revision" { p1RunTransactionalOperation("save_revision"); }
macro "Cavity Light P1 internal: cargar revision" { p1RunLoadRevision(); }
macro "Cavity Light P1 internal: exportar RUN" { p1RunTransactionalOperation("export_run"); }
macro "Cavity Light P1 internal: combinado" { p1ChooseCombinedAndRun(); }
macro "Cavity Light P1 internal: confirmar edicion" { p1FinalizeInteractiveEdit(); }

macro "Cavity Light menu Tool - icon:cavity_studio.png" { lightShowPanel(); }
macro "Cavity Light menu Tool Options" { lightShowPanel(); }
macro "Cavity Light measure Tool - icon:cavity_measure.png" { p1GuardedMeasureCavityByDrag(); }
macro "Cavity Light measure Tool Options" { lightShowHelp(); }
macro "Cavity Light add Tool - icon:cavity_add.png" { p1GuardedAddCavityAtCursor(); }
macro "Cavity Light add Tool Options" { p1SetActiveDiameterInMemory(); }
macro "Cavity Light select edit Tool - icon:cavity_select.png" { p1GuardedSelectOrForceAddAtCursor(); }
macro "Cavity Light select edit Tool Options" { p1LegacyWriteBlocked("ajustes persistentes legacy"); }
macro "Cavity Light fixed zoom Tool - icon:cavity_zoom.png" {
    getCursorLoc(x, y, z, flags);
    shift = 1;
    if ((flags & shift) != 0) zoomOutFixed(); else zoomInFixed();
}
macro "Cavity Light fixed zoom Tool Options" { p1LegacyWriteBlocked("ajustes persistentes legacy"); }

function lightAutoRun() {
    lightInvalidateAnalysisCache();
    usePanelsAsMask = 0;
    v4ProjectLoaded = 0;
    if (nImages() > 0) {
        updateScaleMaybe();
        run("ROI Manager...");
        if (roiManager("count") > 0) loadSessionFromRois(0);
        installInteractionListeners(0);
        lightInteractivePushState(lightInteractiveMode);
    }
    lightShowPanel();
    showStatus("Cavity TEM Light activo. Cree o abra un proyecto de imagenes individuales.");
}

function lightStatusLine1() {
    if (!lightProjectLoaded) return "PROYECTO: no cargado";
    return "PROYECTO: " + lightProjectName + " [" + lightProjectId + "]";
}

function lightStatusLine2() {
    if (lightImageId == "") return "IMAGEN: no registrada";
    rev = lightCurrentRevision; if (rev == "") rev = "sin revision";
    return "IMAGEN: " + lightImageId + " | " + lightImageMode + " | " + rev;
}

function lightStatusLine3() {
    sc = "escala pendiente";
    if (nImages() > 0) {
        scaleReady = updateScaleMaybe();
        if (scaleReady == 1) {
            if (lightScaleConfirmed == 1) sc = d2s(nmPerPixelX,6) + " x " + d2s(nmPerPixelY,6) + " nm/px";
        }
    }
    th = "sin espesor";
    if (lightThicknessNm > 0) th = "t=" + d2s(lightThicknessNm,2) + " nm";
    return "CALIBRACION: " + sc + " | " + th + " | cavidades=" + lightCavityCountCached();
}

function lightStatusLine4() {
    labelsText = "OFF";
    if (showRoiLabels == 1) labelsText = "ID exactos";
    return "INTERACCION R9: d=" + d2s(activeDiameterNm,3) + " nm | paso=" + d2s(lightInteractiveResizeStepNm,3) + " nm | etiquetas=" + labelsText;
}

function lightShowPanel() {
    lightInteractiveReadResizeStep();
    s1 = lightStatusLine1();
    s2 = lightStatusLine2();
    s3 = lightStatusLine3();
    s4 = lightStatusLine4();
    js = "(function(){var Frame=Packages.java.awt.Frame,JFrame=Packages.javax.swing.JFrame,JPanel=Packages.javax.swing.JPanel,JButton=Packages.javax.swing.JButton,JLabel=Packages.javax.swing.JLabel,JTabbedPane=Packages.javax.swing.JTabbedPane,JScrollPane=Packages.javax.swing.JScrollPane,JSlider=Packages.javax.swing.JSlider,BorderLayout=Packages.java.awt.BorderLayout,GridBagLayout=Packages.java.awt.GridBagLayout,GridBagConstraints=Packages.java.awt.GridBagConstraints,Insets=Packages.java.awt.Insets,Dimension=Packages.java.awt.Dimension,Color=Packages.java.awt.Color,Font=Packages.java.awt.Font,Thread=Packages.java.lang.Thread,Runnable=Packages.java.lang.Runnable,ActionListener=Packages.java.awt.event.ActionListener,ChangeListener=Packages.javax.swing.event.ChangeListener,Executer=Packages.ij.Executer,IJ=Packages.ij.IJ,Prefs=Packages.ij.Prefs,WM=Packages.ij.WindowManager;";
    js = js + "var fs=Frame.getFrames();for(var i=0;i<fs.length;i++){try{var title=String(fs[i].getTitle());if(title.indexOf('Cavity TEM Light 1.1.1 R9')==0||title.indexOf('Cavity TEM Light 1.1.1 R9')==0||title.indexOf('Cavity TEM Light 1.0.0 R7')==0)fs[i].dispose();}catch(e){}}";
    js = js + "var f=new JFrame('Cavity TEM Light 1.1.1 R9'),outer=new JPanel(new BorderLayout()),head=new JPanel(new GridBagLayout()),hc=new GridBagConstraints();hc.gridx=0;hc.anchor=GridBagConstraints.WEST;hc.insets=new Insets(3,8,3,8);var a=new JLabel('"+jsEscape(s1)+"'),b=new JLabel('"+jsEscape(s2)+"'),c=new JLabel('"+jsEscape(s3)+"'),d=new JLabel('"+jsEscape(s4)+"');a.setFont(a.getFont().deriveFont(Font.BOLD));hc.gridy=0;head.add(a,hc);hc.gridy=1;head.add(b,hc);hc.gridy=2;head.add(c,hc);hc.gridy=3;head.add(d,hc);outer.add(head,BorderLayout.NORTH);f.getRootPane().putClientProperty('status1',a);f.getRootPane().putClientProperty('status2',b);f.getRootPane().putClientProperty('status3',c);f.getRootPane().putClientProperty('status4',d);var tabs=new JTabbedPane();";
    js = js + "function tab(n){var p=new JPanel(new GridBagLayout()),q=new GridBagConstraints();q.insets=new Insets(4,4,4,4);q.fill=GridBagConstraints.HORIZONTAL;q.weightx=1;var o={p:p,c:q,r:0};tabs.addTab(n,new JScrollPane(p));return o;}function go(cmd){var body={run:function(){new Executer(cmd).run();}};if(typeof JavaAdapter!='undefined')return new JavaAdapter(Runnable,body);var R=Java.extend(Runnable);return new R(body);}function al(cmd){var body={actionPerformed:function(e){var th=new Thread(go(cmd));th.setDaemon(true);th.start();}};if(typeof JavaAdapter!='undefined')return new JavaAdapter(ActionListener,body);var A=Java.extend(ActionListener);return new A(body);}function one(t,label,cmd,pri){var x=new JButton(label);x.addActionListener(al(cmd));if(pri){x.setBackground(new Color(43,109,224));x.setForeground(Color.WHITE);x.setFont(x.getFont().deriveFont(Font.BOLD));}t.c.gridx=0;t.c.gridy=t.r;t.c.gridwidth=2;t.p.add(x,t.c);t.r++;}function two(t,l1,c1,l2,c2){var x=new JButton(l1),y=new JButton(l2);x.addActionListener(al(c1));y.addActionListener(al(c2));t.c.gridy=t.r;t.c.gridwidth=1;t.c.gridx=0;t.p.add(x,t.c);t.c.gridx=1;t.p.add(y,t.c);t.r++;}";
    js = js + "function sliderRow(t){var box=new JPanel(new BorderLayout(8,0)),label=new JLabel('Sensibilidad: " + d2s(lightInteractiveResizeStepNm,3) + " nm/paso'),sl=new JSlider(1,200," + d2s(round(lightInteractiveResizeStepNm*1000),0) + ");sl.setMajorTickSpacing(50);sl.setMinorTickSpacing(5);sl.setPaintTicks(true);var body={stateChanged:function(e){var value=sl.getValue()/1000.0;label.setText('Sensibilidad: '+value.toFixed(3)+' nm/paso');IJ.setProperty('CTL.P1.pending_resize_step_nm',String(value));if(!sl.getValueIsAdjusting()){var th=new Thread(go('Cavity Light: actualizar sensibilidad interactiva'));th.setDaemon(true);th.start();}}};var listener;if(typeof JavaAdapter!='undefined')listener=new JavaAdapter(ChangeListener,body);else{var C=Java.extend(ChangeListener);listener=new C(body);}sl.addChangeListener(listener);box.add(label,BorderLayout.NORTH);box.add(sl,BorderLayout.CENTER);t.c.gridx=0;t.c.gridy=t.r;t.c.gridwidth=2;t.p.add(box,t.c);t.r++;f.getRootPane().putClientProperty('resizeSlider',sl);f.getRootPane().putClientProperty('resizeLabel',label);}";
    js = js + "var p=tab('1 Proyecto');one(p,'Crear proyecto','Cavity Light: crear proyecto',true);one(p,'Abrir proyecto','Cavity Light: abrir proyecto',false);two(p,'Abrir DM3/DM4','Cavity Light: abrir DM3/DM4 y registrar','Registrar activa','Cavity Light: registrar imagen activa');two(p,'Seleccionar imagen','Cavity Light: seleccionar imagen del proyecto','Configurar imagen','Cavity Light: configurar imagen');one(p,'Informacion y trazabilidad','Cavity Light: informacion actual',false);two(p,'Reparar contexto','Cavity Light: reparar contexto de proyecto','Reparar registro','Cavity Light: reparar registro de imagenes');one(p,'Autodiagnostico R9','Cavity Light: autodiagnostico R9',false);";
    js = js + "p=tab('2 Preparar');two(p,'Aceptar escala Bio-Formats','Cavity Light: aceptar escala Bio-Formats','Escala numerica','Cavity Light: introducir escala nm/px');two(p,'Calibrar con linea','Cavity Light: calibrar escala con linea','Verificar escala','Cavity Light: verificar escala');two(p,'Toda la imagen valida','Cavity Light: usar toda la imagen como area','Anadir area valida','Cavity Light: anadir area valida');one(p,'Anadir zona excluida','Cavity Light: anadir zona excluida',false);two(p,'Definir superficie','Cavity Light: definir superficie','Configurar bandas','Cavity Light: configurar bandas');";
    js = js + "p=tab('3 Medir');two(p,'Clase de cavidad','Cavity Light: seleccionar clase de cavidad','Diametro activo','Cavity Light: fijar diametro activo');one(p,'Medir diametro y crear cavidad','Cavity Light: medir diametro y crear cavidad',true);two(p,'Anadir con circulo visible','Cavity Light: anadir con diametro activo','Registrar elipse','Cavity Light: registrar elipse seleccionada');two(p,'Seleccionar/mover/ajustar','Cavity Light: seleccionar/editar','Editar numericamente','Cavity Light: editar seleccionada numericamente');sliderRow(p);two(p,'Incluir/excluir','Cavity Light: incluir/excluir seleccionada','Borrar','Cavity Light: borrar seleccionada');two(p,'Deshacer','Cavity Light: deshacer ultima accion','Duplicados','Cavity Light: buscar duplicados');";
    js = js + "p=tab('4 Microestructura');one(p,'Dibujar dislocaciones','Cavity Light: dibujar dislocaciones',false);one(p,'Dibujar bordes de grano','Cavity Light: dibujar bordes de grano',false);one(p,'Dibujar interfaces','Cavity Light: dibujar interfaces',false);two(p,'Etiquetas ID exactas','Cavity Light: alternar etiquetas','Modo de color','Cavity Light: cambiar modo de color');one(p,'Sincronizar ROIs','Cavity Light: actualizar ROIs',false);";
    js = js + "p=tab('5 Guardar y analizar');one(p,'Validar imagen','Cavity Light: validar imagen',false);one(p,'Guardar nueva revision','Cavity Light: guardar nueva revision',true);one(p,'Cargar revision','Cavity Light: cargar revision',false);one(p,'Calcular y exportar resultados','Cavity Light: calcular y exportar resultados',true);one(p,'Analisis combinado de imagenes','Cavity Light: analisis combinado',true);two(p,'Ajustes','Cavity Light: ajustes','Ayuda','Cavity Light: ayuda');outer.add(tabs,BorderLayout.CENTER);f.setContentPane(outer);f.setPreferredSize(new Dimension(660,760));f.pack();f.setLocationByPlatform(true);f.setVisible(true);f.toFront();return 'OK';})();";
    eval("js", js);
}


function lightRefreshPanel() {
    s1 = lightStatusLine1();
    s2 = lightStatusLine2();
    s3 = lightStatusLine3();
    s4 = lightStatusLine4();
    js = "var F=Packages.java.awt.Frame,fs=F.getFrames();for(var i=0;i<fs.length;i++){try{if(String(fs[i].getTitle())=='Cavity TEM Light 1.1.1 R9'){var r=fs[i].getRootPane(),a=r.getClientProperty('status1'),b=r.getClientProperty('status2'),c=r.getClientProperty('status3'),d=r.getClientProperty('status4');if(a!=null)a.setText('"+jsEscape(s1)+"');if(b!=null)b.setText('"+jsEscape(s2)+"');if(c!=null)c.setText('"+jsEscape(s3)+"');if(d!=null)d.setText('"+jsEscape(s4)+"');var sl=r.getClientProperty('resizeSlider'),lb=r.getClientProperty('resizeLabel');if(sl!=null){var target="+d2s(round(lightInteractiveResizeStepNm*1000),0)+";if(sl.getValue()!=target)sl.setValue(target);}if(lb!=null)lb.setText('Sensibilidad: "+d2s(lightInteractiveResizeStepNm,3)+" nm/paso');fs[i].repaint();}}catch(e){}}";
    eval("js", js);
}


function lightShowHelp() {
    msg = "FLUJO RECOMENDADO R9\n\n";
    msg = msg + "1. Cree o abra un proyecto y seleccione una imagen registrada.\n";
    msg = msg + "2. Confirme escala, modo, espesor y area valida.\n";
    msg = msg + "3. Fije un diametro activo y pulse Anadir con circulo visible. El circulo bajo el cursor representa el diametro fisico activo con la escala actual.\n";
    msg = msg + "4. En modo Anadir, Alt+rueda cambia inmediatamente el diametro del circulo sin modificar el zoom. Ctrl+Alt+rueda se acepta como alias. Cada click usa exactamente el diametro que se ve.\n";
    msg = msg + "5. En modo Seleccionar/mover/ajustar, seleccione una cavidad y use Alt+rueda para cambiar su diametro conservando centro y proporcion. Ctrl+Alt tambien funciona.\n";
    msg = msg + "6. Ctrl+rueda, sin Alt, conserva el zoom normal de la imagen. Rueda y Shift+rueda mantienen la navegacion configurada.\n";
    msg = msg + "7. Ajuste la sensibilidad con el deslizador: 0.001 nm/paso es muy fino; 0.200 nm/paso es rapido. El valor recomendado inicial es 0.010 nm/paso.\n";
    msg = msg + "8. Al soltar el raton o detener la rueda, R9 actualiza automaticamente solo el valor o la ROI afectada. La busqueda completa de duplicados se aplaza hasta Validar imagen.\n";
    msg = msg + "9. Las etiquetas muestran exactamente el nombre estable del ROI Manager, por ejemplo CAV_000237. Los identificadores no se renumeran al borrar una cavidad.\n";
    msg = msg + "10. Valide y despues pulse Calcular y exportar resultados.\n\n";
    msg = msg + "ATAJOS\nCtrl+R anadir | Ctrl+E seleccionar | Alt+rueda ajustar diametro | Ctrl+Alt+rueda alias | Ctrl+rueda zoom | Ctrl+U sincronizar seleccionada | Supr borrar | Ctrl+Z deshacer | Ctrl+Shift+V validar | Ctrl+Shift+E calcular/exportar.\n\n";
    msg = msg + "R9 conserva la preparacion y el area calculada cuando no cambian las ROIs. La densidad volumetrica sigue siendo nominal: N/(A*t), sin correcciones estereologicas ocultas.";
    showMessage("Ayuda Cavity TEM Light 1.1.1 R9", msg);
}

function lightSelfTestR9() {
    oldProjectLoaded=lightProjectLoaded;
    oldProjectRoot=lightProjectRoot;
    oldProjectFile=lightProjectFile;
    oldProjectId=lightProjectId;
    oldProjectName=lightProjectName;
    oldProjectUid=lightProjectUid;
    oldImageId=lightImageId;
    oldImageDir=lightImageDir;
    oldSourcePath=lightSourcePath;
    oldStoredPath=lightSourceStoredPath;
    oldSha=lightSourceSha256;
    oldCopy=lightCopySource;
    oldSample=sampleName;
    oldCondition=experimentalCondition;
    oldOperator=operatorName;
    oldNotes=projectNotes;
    oldConfigured=projectConfigured;
    oldV4=v4ProjectLoaded;
    oldImageMode=lightImageMode;
    oldThickness=lightThicknessNm;
    oldUncertainty=lightThicknessUncertaintyNm;
    oldMethod=lightThicknessMethod;
    oldThicknessNotes=lightThicknessNotes;
    oldOriginalX=lightOriginalScaleNmX;
    oldOriginalY=lightOriginalScaleNmY;
    oldOriginalUnit=lightOriginalScaleUnit;
    oldScaleOrigin=lightScaleOrigin;
    oldScaleConfirmed=lightScaleConfirmed;
    oldWholeImage=lightUseWholeImage;
    oldInclude=lightIncludeUncertain;
    oldRevision=lightCurrentRevision;
    oldRun=lightCurrentRunId;
    oldImageFileName=imageFileName;
    oldImageDirectory=imageDirectory;
    oldImageChecksum=imageChecksum;
    oldMontageId=montageId;
    oldSourceFirst=sourceFirst;
    oldSourceLast=sourceLast;
    oldSourceList=sourceImageList;
    oldMicroscope=microscopeVoltage;
    oldTemperature=specimenTemperature;
    oldActiveDiameter=activeDiameterNm;
    oldBandNm=bandNm;
    oldBandCount=bandCount;
    oldExcludeNegative=excludeNegativeDepth;
    oldHistogram=lightHistogramBinNm;
    oldFeatureBin=lightFeatureDistanceBinNm;
    oldPreparedFingerprint=lightPreparedFingerprint;
    oldPreparedAtMs=lightPreparedAtMs;
    oldPreparationDurationMs=lightLastPreparationDurationMs;
    oldPreparationReused=lightLastPreparationReused;
    oldPreparationRuns=lightPreparationRuns;
    oldPreparationCacheHits=lightPreparationCacheHits;
    oldAreaFingerprint=lightAreaFingerprint;
    oldAreaMode=lightAreaComputationMode;
    oldAreaDurationMs=lightAreaComputationDurationMs;
    oldPreviewEnabled=lightInteractivePreviewEnabled;
    oldResizeStep=lightInteractiveResizeStepNm;
    oldShowLabels=showRoiLabels;

    ok=1;
    details="";
    tempRoot="";

    testRaw="  Fe_D4_II  ";
    testId=lightSanitizeId(testRaw);
    testFolder=testId+"_CavityTEM_Light";
    joinedPreview=lightJoin("D:",testFolder);
    testRootPreview=lightNormalizeDir(joinedPreview);
    if(testRootPreview!="D:/Fe_D4_II_CavityTEM_Light/"){
        ok=0;details=details+"Ruta Fe_D4_II: FAIL\n";
    } else details=details+"Ruta Fe_D4_II: PASS\n";

    tempBaseRaw=getDirectory("temp");
    tempBase=lightNormalizeDir(tempBaseRaw);
    if(tempBase==""){
        showMessage("Autodiagnostico R9 no ejecutado","FIJI no ha proporcionado una carpeta temporal.");
        return;
    }
    tempName="CavityTEMLight_R9_SELFTEST_"+d2s(getTime(),0);
    tempJoined=lightJoin(tempBase,tempName);
    tempRoot=lightNormalizeDir(tempJoined);
    lightDeleteSelfTestTree(tempRoot);

    lightProjectRoot=tempRoot;
    lightProjectFile=lightJoin(tempRoot,lightProjectFileName);
    lightProjectId="Fe_D4_II";
    lightProjectName="Fe_D4_II";
    lightProjectUid=lightUuid();
    sampleName="Fe_strained_irra";
    experimentalCondition="strain_0.2_irra_He";
    operatorName="MRB";
    projectNotes="R9 self-test";
    lightProjectLoaded=1;
    projectConfigured=1;
    v4ProjectLoaded=0;
    lightImageId="";
    lightImageDir="";
    lightSourceSha256="";

    structureFlag=lightEnsureProjectStructure();
    projectFlag=0;
    if(structureFlag==1)projectFlag=lightWriteProjectFile();
    descriptorFlag=lightProjectDescriptorValid(lightProjectFile,lightProjectId,lightProjectUid);
    if(structureFlag!=1||projectFlag!=1||descriptorFlag!=1){
        ok=0;details=details+"Descriptor canonico temporal: FAIL\n";
    } else details=details+"Descriptor canonico temporal: PASS\n";

    lightImageId="SELFTEST_IMAGE";
    lightSourcePath="D:/SELFTEST_IMAGE.dm4";
    lightSourceStoredPath="";
    lightSourceSha256="0123456789abcdef0123456789abcdef0123456789abcdef0123456789abcdef";
    lightCopySource=0;
    imageFileName="SELFTEST_IMAGE.dm4";
    imageDirectory="D:/";
    imageChecksum=lightSourceSha256;
    montageId=lightImageId;
    sourceFirst=imageFileName;
    sourceLast=imageFileName;
    sourceImageList=imageFileName;
    lightImageMode="with_surface";
    lightThicknessNm=60;
    lightThicknessUncertaintyNm=10;
    lightThicknessMethod="EELS";
    lightThicknessNotes="roundtrip";
    lightOriginalScaleNmX=0.0504;
    lightOriginalScaleNmY=0.0504;
    lightOriginalScaleUnit="microns";
    lightScaleOrigin="bioformats_metadata";
    lightScaleConfirmed=0;
    lightUseWholeImage=0;
    lightIncludeUncertain=1;
    lightCurrentRevision="";
    lightCurrentRunId="";

    metadataWriteFlag=lightWriteImageMetadata();
    imagesRoot=lightJoin(lightProjectRoot,"images");
    imagePath=lightJoin(imagesRoot,lightImageId);
    expectedImageDir=lightNormalizeDir(imagePath);
    expectedMeta=lightJoin(expectedImageDir,lightImageMetadataFileName);
    metadataMatchFlag=lightImageMetadataMatches(expectedMeta,lightImageId,lightSourceSha256);
    wrongIdFlag=lightImageMetadataMatches(expectedMeta,"WRONG_IMAGE",lightSourceSha256);
    wrongShaFlag=lightImageMetadataMatches(expectedMeta,lightImageId,"ffffffffffffffffffffffffffffffffffffffffffffffffffffffffffffffff");
    if(metadataWriteFlag!=1||metadataMatchFlag!=1||wrongIdFlag!=0||wrongShaFlag!=0){
        ok=0;details=details+"Escritura y validacion estricta image_metadata.tsv: FAIL\n";
    } else details=details+"Escritura y validacion estricta image_metadata.tsv: PASS\n";

    lightImageMode="without_surface";
    lightThicknessNm=0;
    lightThicknessUncertaintyNm=0;
    lightThicknessMethod="not_provided";
    lightIncludeUncertain=0;
    metadataReadFlag=lightReadImageMetadata();
    if(metadataReadFlag!=1||lightImageMode!="with_surface"||lightThicknessNm!=60||lightThicknessUncertaintyNm!=10||lightThicknessMethod!="EELS"||lightIncludeUncertain!=1){
        ok=0;details=details+"Lectura completa image_metadata.tsv: FAIL\n";
    } else details=details+"Lectura completa image_metadata.tsv: PASS\n";

    registryFlag=lightUpdateRegistry();
    registryPath=lightJoin(lightProjectRoot,lightRegistryFileName);
    registryExists=lightFileExistsFlag(registryPath);
    if(registryFlag!=1||registryExists!=1){
        ok=0;details=details+"Actualizacion images.tsv: FAIL\n";
    } else details=details+"Actualizacion images.tsv: PASS\n";

    headerValue=lightRegistryHeader();
    File.saveString(headerValue,registryPath);
    repairText=lightRepairImageRegistryCore(1);
    registryContent=File.openAsString(registryPath);
    registryHasImage=0;
    if(indexOf(registryContent,"SELFTEST_IMAGE\t")>=0)registryHasImage=1;
    if(!startsWith(repairText,"OK|")||registryHasImage!=1){
        ok=0;details=details+"Reconstruccion de images.tsv: FAIL\n";
    } else details=details+"Reconstruccion de images.tsv: PASS\n";

    wrongDescriptorAccepted=lightProjectDescriptorValid(expectedMeta,lightProjectId,lightProjectUid);
    if(wrongDescriptorAccepted!=0){
        ok=0;details=details+"Rechazo de image_metadata.tsv como proyecto: FAIL\n";
    } else details=details+"Rechazo de image_metadata.tsv como proyecto: PASS\n";

    parserResult="16777216|1150.8073281901288|";
    parserParts=split(parserResult,"|");
    parserOk=0;
    if(parserParts.length>=2){
        parserPixels=parseFloat(parserParts[0]);
        parserArea=parseFloat(parserParts[1]);
        if(parserPixels==16777216){
            if(abs(parserArea-1150.8073281901288)<0.000001)parserOk=1;
        }
    }
    if(parserOk!=1){
        ok=0;details=details+"Parser de area sin tercer campo: FAIL\n";
    } else details=details+"Parser de area sin tercer campo: PASS\n";

    lightInteractivePreviewEnabled=1;
    lightInteractiveResizeStepNm=0.010;
    showRoiLabels=1;
    interactionOk=1;
    if(lightInteractiveResizeStepNm<lightInteractiveResizeMinNm)interactionOk=0;
    if(lightInteractiveResizeStepNm>lightInteractiveResizeMaxNm)interactionOk=0;
    testStableId="CAV_"+IJ.pad(237,6);
    if(testStableId!="CAV_000237")interactionOk=0;
    if(interactionOk!=1){
        ok=0;details=details+"Interaccion, sensibilidad, rueda y ID estable R9: FAIL\n";
    } else details=details+"Interaccion, sensibilidad, rueda y ID estable R9: PASS\n";

    interactionPrefOk = 1;
    prefStep = lightInteractiveResizeStepNm;
    if (abs(prefStep-0.010) > 0.000001) interactionPrefOk = 0;
    if (lightInteractivePreviewEnabled != 1) interactionPrefOk = 0;
    if (showRoiLabels != 1) interactionPrefOk = 0;
    if (lightInteractivePreviewName != "__CTL_R8_CURSOR_PREVIEW__") interactionPrefOk = 0;
    testOldDiameter = 0.8149;
    testStep = 0.0100;
    testRotation = -3;
    testNewDiameter = testOldDiameter-testRotation*testStep;
    if (abs(testNewDiameter-0.8449) > 0.0000001) interactionPrefOk = 0;
    if (interactionPrefOk != 1) {
        ok=0;details=details+"Configuracion interactiva y etiquetas exactas: FAIL\n";
    } else details=details+"Configuracion interactiva y etiquetas exactas: PASS\n";

    cleanupFlag=lightDeleteSelfTestTree(tempRoot);
    if(cleanupFlag!=1){
        ok=0;details=details+"Limpieza temporal: FAIL\n";
    } else details=details+"Limpieza temporal: PASS\n";

    lightProjectLoaded=oldProjectLoaded;
    lightProjectRoot=oldProjectRoot;
    lightProjectFile=oldProjectFile;
    lightProjectId=oldProjectId;
    lightProjectName=oldProjectName;
    lightProjectUid=oldProjectUid;
    lightImageId=oldImageId;
    lightImageDir=oldImageDir;
    lightSourcePath=oldSourcePath;
    lightSourceStoredPath=oldStoredPath;
    lightSourceSha256=oldSha;
    lightCopySource=oldCopy;
    sampleName=oldSample;
    experimentalCondition=oldCondition;
    operatorName=oldOperator;
    projectNotes=oldNotes;
    projectConfigured=oldConfigured;
    v4ProjectLoaded=oldV4;
    lightImageMode=oldImageMode;
    lightThicknessNm=oldThickness;
    lightThicknessUncertaintyNm=oldUncertainty;
    lightThicknessMethod=oldMethod;
    lightThicknessNotes=oldThicknessNotes;
    lightOriginalScaleNmX=oldOriginalX;
    lightOriginalScaleNmY=oldOriginalY;
    lightOriginalScaleUnit=oldOriginalUnit;
    lightScaleOrigin=oldScaleOrigin;
    lightScaleConfirmed=oldScaleConfirmed;
    lightUseWholeImage=oldWholeImage;
    lightIncludeUncertain=oldInclude;
    lightCurrentRevision=oldRevision;
    lightCurrentRunId=oldRun;
    imageFileName=oldImageFileName;
    imageDirectory=oldImageDirectory;
    imageChecksum=oldImageChecksum;
    montageId=oldMontageId;
    sourceFirst=oldSourceFirst;
    sourceLast=oldSourceLast;
    sourceImageList=oldSourceList;
    microscopeVoltage=oldMicroscope;
    specimenTemperature=oldTemperature;
    activeDiameterNm=oldActiveDiameter;
    bandNm=oldBandNm;
    bandCount=oldBandCount;
    excludeNegativeDepth=oldExcludeNegative;
    lightHistogramBinNm=oldHistogram;
    lightFeatureDistanceBinNm=oldFeatureBin;
    lightPreparedFingerprint=oldPreparedFingerprint;
    lightPreparedAtMs=oldPreparedAtMs;
    lightLastPreparationDurationMs=oldPreparationDurationMs;
    lightLastPreparationReused=oldPreparationReused;
    lightPreparationRuns=oldPreparationRuns;
    lightPreparationCacheHits=oldPreparationCacheHits;
    lightAreaFingerprint=oldAreaFingerprint;
    lightAreaComputationMode=oldAreaMode;
    lightAreaComputationDurationMs=oldAreaDurationMs;
    lightInteractivePreviewEnabled=oldPreviewEnabled;
    lightInteractiveResizeStepNm=oldResizeStep;
    showRoiLabels=oldShowLabels;

    if(ok==1){
        showMessage("Autodiagnostico R9 correcto","Se han probado rutas, descriptores, registro, limpieza temporal, limites de sensibilidad, enrutado de rueda e identidad estable de etiquetas R9.\n\n"+details+"\nNo se ha modificado ningun proyecto real.");
    } else {
        showMessage("Autodiagnostico R9 no superado","No continue con medidas hasta revisar la instalacion.\n\n"+details+"\nCarpeta temporal usada:\n"+tempRoot);
    }
}

function lightCreateProject() {
    parent=chooseDirectorySafe("Elige la carpeta donde crear el proyecto Light");if(parent=="")return;
    Dialog.create("Nuevo proyecto Cavity TEM Light");Dialog.addString("Nombre del proyecto:","Cavity_TEM_Light_Project",40);Dialog.addString("Muestra/material:",sampleName,35);Dialog.addString("Condicion experimental:",experimentalCondition,40);Dialog.addString("Operador:",getInfo("user.name"),30);Dialog.addString("Notas:","",50);Dialog.show();
    pName=Dialog.getString();newSample=Dialog.getString();newCondition=Dialog.getString();newOperator=Dialog.getString();newNotes=Dialog.getString();if(pName=="")exit("El nombre del proyecto no puede estar vacio.");if(!lightPrepareProjectSwitch())return;
    safeProjectId=lightSanitizeId(pName);projectFolderName=safeProjectId+"_CavityTEM_Light";joinedProjectRoot=lightJoin(parent,projectFolderName);root=lightNormalizeDir(joinedProjectRoot);existingProject=lightJoin(root,lightProjectFileName);
    if(File.exists(root)){
        if(File.exists(existingProject)){
            if(!getBoolean("La carpeta ya contiene un proyecto Cavity TEM Light.\n\nAbrirlo sin sobrescribir sus datos?\n"+root,"Abrir existente","Cancelar"))return;
            if(!lightLoadProjectFile(existingProject))return;
            structureOk=lightEnsureProjectStructure();if(structureOk!=1){showMessage("Proyecto incompleto","No se pudo preparar la estructura interna minima.");return;}
            lightAppendLog("PROJECT_OPENED_EXISTING","path="+root);showMessage("Proyecto existente abierto","Proyecto: "+lightProjectName+"\nCarpeta: "+lightProjectRoot+"\n\nNo se ha sobrescrito ningun identificador ni archivo.");lightShowPanel();return;
        }
        recoverable=lightIsRecoverableInterruptedProject(root);
        if(recoverable==1){
            if(!getBoolean("Se ha detectado una carpeta parcial compatible con el fallo de R2.\n\nContiene solo la estructura vacia del proyecto y no contiene imagenes ni datos cientificos. R9 puede completarla sin borrar ningun archivo.\n\n"+root,"Completar proyecto","Cancelar"))return;
            lightProjectRoot=root;lightProjectName=pName;lightProjectId=safeProjectId;lightProjectUid=lightUuid();lightProjectFile=existingProject;sampleName=newSample;experimentalCondition=newCondition;operatorName=newOperator;projectNotes=newNotes;lightProjectLoaded=1;projectConfigured=1;v4ProjectLoaded=0;lightResetImageState();
            structureOk=lightEnsureProjectStructure();if(structureOk!=1){lightProjectLoaded=0;projectConfigured=0;showMessage("Proyecto no recuperado","No se pudo completar la estructura interna.");return;}
            writeOk=lightWriteProjectFile();if(writeOk!=1){lightProjectLoaded=0;projectConfigured=0;showMessage("Proyecto no recuperado","No se pudo escribir y verificar "+lightProjectFileName+".");return;}
            lightAppendLog("PROJECT_RECOVERED_AFTER_R2_INTERRUPTION","path="+lightProjectRoot+"; schema="+lightSchemaVersion);showMessage("Proyecto recuperado","Proyecto: "+lightProjectName+"\nCarpeta: "+lightProjectRoot+"\n\nR9 ha completado la carpeta parcial de R2 sin borrar ningun archivo. Ya puede registrar la primera imagen.");lightShowPanel();return;
        }
        showMessage("Carpeta no utilizada","La carpeta ya existe, pero no contiene un proyecto valido ni una estructura parcial R2 vacia.\n\nPara proteger archivos ajenos, R9 no escribira en ella. Elige otro nombre o revisa la carpeta manualmente.");return;
    }
    lightMakeDir(root);if(!File.exists(root)){showMessage("Proyecto no creado","No se pudo crear la carpeta:\n"+root);return;}
    lightProjectRoot=root;lightProjectName=pName;lightProjectId=safeProjectId;lightProjectUid=lightUuid();lightProjectFile=existingProject;sampleName=newSample;experimentalCondition=newCondition;operatorName=newOperator;projectNotes=newNotes;lightProjectLoaded=1;projectConfigured=1;v4ProjectLoaded=0;lightResetImageState();
    structureOk=lightEnsureProjectStructure();if(structureOk!=1){lightProjectLoaded=0;projectConfigured=0;showMessage("Proyecto no creado","No se pudo preparar la estructura interna del proyecto.");return;}
    writeOk=lightWriteProjectFile();if(writeOk!=1){lightProjectLoaded=0;projectConfigured=0;showMessage("Proyecto no creado","No se pudo escribir y verificar "+lightProjectFileName+".");return;}
    lightAppendLog("PROJECT_CREATED","path="+lightProjectRoot+"; schema="+lightSchemaVersion);showMessage("Proyecto creado","Proyecto: "+lightProjectName+"\nCarpeta: "+lightProjectRoot+"\n\nNo contiene montajes ni SVG. Cada imagen se registra de forma independiente.");lightShowPanel();
}
function lightClearProjectState() {
    lightResetImageState();lightProjectLoaded=0;lightProjectRoot="";lightProjectFile="";lightProjectId="";lightProjectName="";lightProjectUid="";projectConfigured=0;v4ProjectLoaded=0;
}

function lightFileExistsFlag(path) {
    existsFlag=0;
    if(path!=""&&File.exists(path))existsFlag=1;
    return existsFlag;
}

function lightProjectDescriptorValid(path,expectedId,expectedUid) {
    if(path=="")return 0;
    fileExists=lightFileExistsFlag(path);
    if(fileExists==0)return 0;
    fileNameValue=File.getName(path);
    if(fileNameValue!=lightProjectFileName)return 0;

    schemaValue=lightKvRead(path,"schema_version","");
    if(schemaValue!=lightSchemaVersion)return 0;

    descriptorValue=lightKvRead(path,"descriptor_type","");
    if(descriptorValue!=""&&descriptorValue!=lightProjectDescriptorType)return 0;

    pidValue=lightKvRead(path,"project_id","");
    uidValue=lightKvRead(path,"project_uid","");
    nameValue=lightKvRead(path,"project_name","");
    if(pidValue==""||uidValue==""||nameValue=="")return 0;
    if(expectedId!=""&&pidValue!=expectedId)return 0;
    if(expectedUid!=""&&uidValue!=expectedUid)return 0;
    return 1;
}

function lightFindCanonicalProjectFile(startPath) {
    if(startPath=="")return "";
    normalizedStart=normalizeStoredPath(startPath);
    js="(function(){var F=Packages.java.io.File,f=new F('"+jsEscape(normalizedStart)+"');if(f.isFile())f=f.getParentFile();else if(!f.isDirectory())f=f.getParentFile();for(var i=0;i<16&&f!=null;i++){var p=new F(f,'"+lightProjectFileName+"');if(p.isFile())return String(p.getAbsolutePath()).replace(/\\\\/g,'/');f=f.getParentFile();}return '';})();";
    found=eval("js",js);found=""+found;return found;
}

function lightImageMetadataMatches(meta,expectedImageId,expectedSha) {
    if(meta=="")return 0;
    metaExists=lightFileExistsFlag(meta);
    if(metaExists==0)return 0;

    schemaValue=lightKvRead(meta,"schema_version","");
    if(schemaValue!=lightSchemaVersion)return 0;

    descriptorValue=lightKvRead(meta,"descriptor_type","");
    if(descriptorValue!=""&&descriptorValue!=lightImageDescriptorType)return 0;

    projectIdValue=lightKvRead(meta,"project_id","");
    if(projectIdValue!=lightProjectId)return 0;

    projectUidValue=lightKvRead(meta,"project_uid","");
    if(projectUidValue!=lightProjectUid)return 0;

    imageIdValue=lightKvRead(meta,"image_id","");
    if(expectedImageId!=""&&imageIdValue!=expectedImageId)return 0;

    sourceShaValue=lightKvRead(meta,"source_sha256","");
    if(expectedSha!=""&&sourceShaValue!=expectedSha)return 0;
    return 1;
}

function lightRepairProjectContext(verbose) {
    expectedId=lightProjectId;expectedUid=lightProjectUid;descriptor="";
    if(lightProjectFile!=""){
        candidate=lightFindCanonicalProjectFile(lightProjectFile);
        if(lightProjectDescriptorValid(candidate,expectedId,expectedUid)==1)descriptor=candidate;
    }
    if(descriptor==""&&lightProjectRoot!=""){
        candidate=lightFindCanonicalProjectFile(lightProjectRoot);
        if(lightProjectDescriptorValid(candidate,expectedId,expectedUid)==1)descriptor=candidate;
    }
    if(descriptor==""&&lightImageDir!=""){
        candidate=lightFindCanonicalProjectFile(lightImageDir);
        if(lightProjectDescriptorValid(candidate,expectedId,expectedUid)==1)descriptor=candidate;
    }
    if(descriptor==""&&lightSourceStoredPath!=""){
        candidate=lightFindCanonicalProjectFile(lightSourceStoredPath);
        if(lightProjectDescriptorValid(candidate,expectedId,expectedUid)==1)descriptor=candidate;
    }
    if(descriptor==""){
        if(verbose==1)showMessage("Contexto no reparado","No se encontro un "+lightProjectFileName+" canonico que coincida con el Project ID y Project UID actuales.\n\nAbra manualmente el descriptor situado en la raiz del proyecto.");
        return 0;
    }
    repairedRoot=lightNormalizeDir(File.getDirectory(descriptor));
    repairedId=lightKvRead(descriptor,"project_id","");repairedUid=lightKvRead(descriptor,"project_uid","");
    lightProjectFile=normalizeStoredPath(descriptor);lightProjectRoot=repairedRoot;lightProjectId=repairedId;lightProjectUid=repairedUid;
    lightProjectName=lightKvRead(descriptor,"project_name",repairedId);sampleName=lightKvRead(descriptor,"sample_name",sampleName);experimentalCondition=lightKvRead(descriptor,"experimental_condition",experimentalCondition);operatorName=lightKvRead(descriptor,"operator_name",operatorName);projectNotes=lightKvRead(descriptor,"project_notes",projectNotes);
    lightProjectLoaded=1;projectConfigured=1;v4ProjectLoaded=0;
    if(lightImageId!=""){
        expectedImageDir=lightNormalizeDir(lightJoin(lightJoin(lightProjectRoot,"images"),lightImageId));
        expectedMeta=lightJoin(expectedImageDir,lightImageMetadataFileName);
        if(lightImageMetadataMatches(expectedMeta,lightImageId,lightSourceSha256)==1)lightImageDir=expectedImageDir;
    }
    if(verbose==1)showMessage("Contexto reparado","Descriptor canonico:\n"+lightProjectFile+"\n\nRaiz activa:\n"+lightProjectRoot+"\n\nNo se ha modificado el DM3/DM4 ni ninguna revision ROI.");
    return 1;
}
function lightRepairImageRegistryCore(makeBackup) {
    guardOk=lightCanonicalProjectGuard("reparar el registro de imagenes");
    if(guardOk==0)return "ERROR|contexto no canonico|0|0";

    imagesDir=lightJoin(lightProjectRoot,"images");
    registryPath=lightJoin(lightProjectRoot,lightRegistryFileName);
    logsDir=lightJoin(lightProjectRoot,"logs");
    logsMade=lightMakeDir(logsDir);
    if(logsMade==0)return "ERROR|no se pudo preparar logs|0|0";

    timestampValue=lightTimestamp();
    backupPath="";
    if(makeBackup==1&&File.exists(registryPath)){
        backupName="images_before_repair_"+timestampValue+".tsv";
        backupPath=lightJoin(logsDir,backupName);
    }
    headerValue=lightRegistryHeader();

    js="(function(){";
    js=js+"var Files=Packages.java.nio.file.Files,Paths=Packages.java.nio.file.Paths,CS=Packages.java.nio.charset.StandardCharsets,Copy=Packages.java.nio.file.StandardCopyOption,F=Packages.java.io.File;";
    js=js+"var images=new F('"+jsEscape(imagesDir)+"'),reg=Paths.get('"+jsEscape(registryPath)+"'),backup='"+jsEscape(backupPath)+"';";
    js=js+"var expectedSchema='"+jsEscape(lightSchemaVersion)+"',expectedDescriptor='"+jsEscape(lightImageDescriptorType)+"',expectedProject='"+jsEscape(lightProjectId)+"',expectedUid='"+jsEscape(lightProjectUid)+"',header='"+jsEscape(headerValue)+"';";
    js=js+"function clean(v){v=v==null?'':String(v);return v.replace(/[\\t\\r\\n]+/g,' ');}";
    js=js+"function parse(txt){var o={},ls=String(txt).split(/\\r?\\n/);for(var i=0;i<ls.length;i++){if(!ls[i])continue;var k=ls[i].indexOf('\\t');if(k>0)o[ls[i].slice(0,k)]=ls[i].slice(k+1).trim();}return o;}";
    js=js+"function baseName(v){v=String(v||'').replace(/\\\\/g,'/');var a=v.split('/');return a.length?a[a.length-1]:'';}";
    js=js+"try{";
    js=js+"if(!images.isDirectory())return 'ERROR|no existe la carpeta images|0|0';";
    js=js+"var dirs=images.listFiles(),rows=[],skipped=0;";
    js=js+"if(dirs!=null){for(var i=0;i<dirs.length;i++){var d=dirs[i];if(!d.isDirectory())continue;var meta=new F(d,'"+lightImageMetadataFileName+"');if(!meta.isFile()){skipped++;continue;}";
    js=js+"var kv=parse(new java.lang.String(Files.readAllBytes(meta.toPath()),CS.UTF_8));var id=String(kv.image_id||'');var sha=String(kv.source_sha256||'');var descriptor=String(kv.descriptor_type||'');";
    js=js+"if(String(kv.schema_version||'')!=expectedSchema||(descriptor!=''&&descriptor!=expectedDescriptor)||String(kv.project_id||'')!=expectedProject||String(kv.project_uid||'')!=expectedUid||id==''||id!=String(d.getName())||sha.length!=64){skipped++;continue;}";
    js=js+"var source=String(kv.source_path||''),stored=String(kv.stored_path||''),display=baseName(source);if(display=='')display=baseName(stored);if(display=='')display=id;";
    js=js+"var row=[id,display,source,stored,sha,String(kv.sample_name||''),String(kv.experimental_condition||''),String(kv.image_mode||'without_surface'),String(kv.foil_thickness_nm||''),String(kv.active_scale_x_nm_px||''),String(kv.active_scale_y_nm_px||''),String(kv.current_revision||''),String(kv.current_run||''),String(kv.updated_ms||java.lang.System.currentTimeMillis())];";
    js=js+"for(var j=0;j<row.length;j++)row[j]=clean(row[j]);rows.push([id,row.join('\\t')]);}}";
    js=js+"if(rows.length==0)return 'EMPTY||0|'+skipped;rows.sort(function(a,b){return a[0]<b[0]?-1:(a[0]>b[0]?1:0);});";
    js=js+"if(backup!=''&&Files.exists(reg)){try{Files.copy(reg,Paths.get(backup),Copy.REPLACE_EXISTING);}catch(e){return 'ERROR|no se pudo crear la copia de seguridad|0|'+skipped;}}";
    js=js+"var out=[String(header).replace(/[\\r\\n]+$/,'')];for(i=0;i<rows.length;i++)out.push(rows[i][1]);Files.write(reg,new java.lang.String(out.join('\\n')+'\\n').getBytes(CS.UTF_8));";
    js=js+"return 'OK|'+backup+'|'+rows.length+'|'+skipped;";
    js=js+"}catch(ex){return 'ERROR|'+clean(ex)+'|0|0';}";
    js=js+"})();";

    repairResult=eval("js",js);
    repairText=""+repairResult;
    return repairText;
}

function lightRepairImageRegistryInteractive() {
    repairText=lightRepairImageRegistryCore(1);
    repairParts=split(repairText,"|");
    repairStatus="";
    if(repairParts.length>0)repairStatus=repairParts[0];

    if(repairStatus=="OK"){
        repairedCount="0";
        skippedCount="0";
        backupValue="";
        if(repairParts.length>1)backupValue=repairParts[1];
        if(repairParts.length>2)repairedCount=repairParts[2];
        if(repairParts.length>3)skippedCount=repairParts[3];
        msg="Se ha reconstruido "+lightRegistryFileName+" a partir de los image_metadata.tsv canonicos.\n\nImagenes recuperadas: "+repairedCount+"\nCarpetas omitidas: "+skippedCount;
        if(backupValue!="")msg=msg+"\nCopia de seguridad: "+backupValue;
        msg=msg+"\n\nNo se ha borrado ni vuelto a copiar ningun DM3/DM4, ROI o resultado.";
        lightAppendLog("IMAGE_REGISTRY_REBUILT","count="+repairedCount+"; skipped="+skippedCount+"; backup="+backupValue);
        showMessage("Registro de imagenes reparado",msg);
        lightRefreshPanel();
        return;
    }
    if(repairStatus=="EMPTY"){
        showMessage("Registro no reconstruido","No se encontro ningun image_metadata.tsv canonico y compatible en la carpeta images.\n\nNo se ha modificado "+lightRegistryFileName+".");
        return;
    }
    repairReason="Error no especificado";
    if(repairParts.length>1){
        candidateReason=repairParts[1];
        if(candidateReason!="")repairReason=candidateReason;
    }
    showMessage("Registro no reparado",repairReason+"\n\nNo se ha modificado ningun DM3/DM4 ni revision ROI.");
}


function lightRepairProjectContextInteractive() {
    beforeRoot=lightProjectRoot;beforeFile=lightProjectFile;
    repaired=lightRepairProjectContext(0);
    if(repaired==0){showMessage("Contexto no reparado","No se pudo localizar automaticamente el descriptor canonico.\n\nUse Abrir proyecto y seleccione exactamente "+lightProjectFileName+" en la raiz del proyecto.");return;}
    changedContext=0;if(beforeRoot!=lightProjectRoot)changedContext=1;if(beforeFile!=lightProjectFile)changedContext=1;
    if(changedContext==1)showMessage("Contexto reparado","Antes:\n"+beforeRoot+"\n\nAhora:\n"+lightProjectRoot+"\n\nLas escrituras volveran a realizarse en la raiz canonica.");
    else showMessage("Contexto correcto","La raiz y el descriptor ya eran canonicos:\n"+lightProjectRoot);
    lightShowPanel();
}

function lightCanonicalProjectGuard(operationName) {
    repaired=lightRepairProjectContext(0);
    if(repaired==0){showMessage("Operacion bloqueada","No se puede "+operationName+" porque el contexto del proyecto no es canonico.\n\nAbra "+lightProjectFileName+" desde la raiz del proyecto o pulse Reparar contexto.");return 0;}
    valid=lightProjectDescriptorValid(lightProjectFile,lightProjectId,lightProjectUid);
    if(valid==0){showMessage("Operacion bloqueada","El descriptor del proyecto no supera la validacion estricta:\n"+lightProjectFile);return 0;}
    canonicalRoot=lightNormalizeDir(File.getDirectory(lightProjectFile));
    if(canonicalRoot!=lightProjectRoot){showMessage("Operacion bloqueada","La raiz activa no coincide con la carpeta del descriptor canonico.\n\nRaiz: "+lightProjectRoot+"\nDescriptor: "+lightProjectFile);return 0;}
    return 1;
}

function lightPrepareImageContextForWrite(allowCreate) {
    guardOk=lightCanonicalProjectGuard("escribir datos de la imagen");
    if(guardOk==0)return 0;
    if(lightImageId=="")return 0;

    imagesRoot=lightJoin(lightProjectRoot,"images");
    imagePath=lightJoin(imagesRoot,lightImageId);
    expectedImageDir=lightNormalizeDir(imagePath);
    expectedMeta=lightJoin(expectedImageDir,lightImageMetadataFileName);

    metaExists=lightFileExistsFlag(expectedMeta);
    if(metaExists==1){
        metaMatches=lightImageMetadataMatches(expectedMeta,lightImageId,lightSourceSha256);
        if(metaMatches==0){
            showMessage("Escritura bloqueada","El metadato existente no coincide con proyecto, imagen o SHA-256:\n"+expectedMeta);
            return 0;
        }
    } else {
        if(allowCreate!=1)return 0;
        created=lightMakeDir(expectedImageDir);
        if(created==0)return 0;
        sourceDir=lightJoin(expectedImageDir,"source");
        revisionsDir=lightJoin(expectedImageDir,"roi_sessions");
        imageLogsDir=lightJoin(expectedImageDir,"logs");
        sourceMade=lightMakeDir(sourceDir);
        revisionsMade=lightMakeDir(revisionsDir);
        logsMade=lightMakeDir(imageLogsDir);
        if(sourceMade==0||revisionsMade==0||logsMade==0)return 0;
    }
    lightImageDir=expectedImageDir;
    return 1;
}
function lightOpenProject() {
    selectedPath=File.openDialog("Selecciona cavity_light_project.tsv");
    if(selectedPath=="")return;
    selectedPath=normalizeStoredPath(selectedPath);candidatePath=selectedPath;
    if(File.getName(candidatePath)!=lightProjectFileName){
        candidatePath=lightFindCanonicalProjectFile(selectedPath);
        if(candidatePath==""){showMessage("Archivo rechazado","El archivo seleccionado no es "+lightProjectFileName+" y no se encontro un descriptor canonico en sus carpetas superiores.\n\nNo seleccione image_metadata.tsv.");return;}
        if(!getBoolean("Se ha seleccionado un archivo interno. Se ha localizado el descriptor canonico:\n\n"+candidatePath+"\n\nAbrir este proyecto?","Abrir descriptor","Cancelar"))return;
    }
    if(lightProjectDescriptorValid(candidatePath,"","")==0){showMessage("Proyecto invalido","El archivo no cumple el contrato de proyecto Light schema "+lightSchemaVersion+":\n"+candidatePath);return;}
    if(!lightPrepareProjectSwitch())return;
    loadFlag=lightLoadProjectFile(candidatePath);if(loadFlag==0)return;
    structureReady=lightEnsureProjectStructure();
    if(structureReady==0){failedRoot=lightProjectRoot;lightClearProjectState();showMessage("Proyecto incompleto","No se pudo comprobar la estructura interna minima de:\n"+failedRoot);return;}
    lightAppendLog("PROJECT_OPENED","path="+lightProjectRoot);
    showMessage("Proyecto abierto","Proyecto: "+lightProjectName+"\nMuestra: "+sampleName+"\nCondicion: "+experimentalCondition+"\nRaiz canonica: "+lightProjectRoot+"\n\nPuede abrir o seleccionar una imagen registrada.");
    lightShowPanel();
}

function lightPrepareProjectSwitch() {
    run("ROI Manager...");if(roiManager("count")>0){if(!getBoolean("El ROI Manager contiene objetos del proyecto o imagen actual.\n\nPara cambiar de proyecto debe vaciarse. Asegurese de haber guardado antes una revision.","Vaciar y cambiar","Cancelar"))return 0;roiManager("reset");}return 1;
}

function lightResetImageState() {
    lightImageId="";lightImageDir="";lightSourcePath="";lightSourceStoredPath="";lightSourceSha256="";lightCopySource=0;lightImageMode="without_surface";lightThicknessNm=0;lightThicknessUncertaintyNm=0;lightThicknessMethod="not_provided";lightThicknessNotes="";lightOriginalScaleNmX=NaN;lightOriginalScaleNmY=NaN;lightOriginalScaleUnit="";lightScaleOrigin="bioformats_metadata";lightScaleConfirmed=0;lightUseWholeImage=0;lightIncludeUncertain=0;lightCurrentRevision="";lightCurrentRunId="";imageFileName="";imageDirectory="";imageChecksum="";montageId="";sourceFirst="";sourceLast="";sourceImageList="";scaleDefined=0;surfaceDefined=0;surfaceSideDefined=0;projectConfigured=1;v4ProjectLoaded=0;
}
function lightLoadProjectFile(path) {
    path=normalizeStoredPath(path);
    descriptorOk=lightProjectDescriptorValid(path,"","");
    if(descriptorOk==0){
        showMessage("Proyecto invalido","Debe seleccionar exactamente un "+lightProjectFileName+" valido.\n\nArchivo recibido:\n"+path);
        return 0;
    }

    candidateFile=path;
    candidateDir=File.getDirectory(path);
    candidateRoot=lightNormalizeDir(candidateDir);
    candidateId=lightKvRead(path,"project_id","");
    candidateUid=lightKvRead(path,"project_uid","");
    candidateName=lightKvRead(path,"project_name",candidateId);
    candidateSample=lightKvRead(path,"sample_name","");
    candidateCondition=lightKvRead(path,"experimental_condition","");
    defaultOperator=getInfo("user.name");
    candidateOperator=lightKvRead(path,"operator_name",defaultOperator);
    candidateNotes=lightKvRead(path,"project_notes","");

    lightProjectFile=candidateFile;
    lightProjectRoot=candidateRoot;
    lightProjectId=candidateId;
    lightProjectUid=candidateUid;
    lightProjectName=candidateName;
    sampleName=candidateSample;
    experimentalCondition=candidateCondition;
    operatorName=candidateOperator;
    projectNotes=candidateNotes;
    lightProjectLoaded=1;
    projectConfigured=1;
    v4ProjectLoaded=0;
    lightResetImageState();
    return 1;
}
function lightWriteProjectFile() {
    if(lightProjectRoot=="")return 0;
    lightProjectFile=lightJoin(lightProjectRoot,lightProjectFileName);

    cleanProjectId=lightTsvClean(lightProjectId);
    cleanProjectUid=lightTsvClean(lightProjectUid);
    cleanProjectName=lightTsvClean(lightProjectName);
    cleanSampleName=lightTsvClean(sampleName);
    cleanCondition=lightTsvClean(experimentalCondition);
    cleanOperator=lightTsvClean(operatorName);
    cleanProjectNotes=lightTsvClean(projectNotes);
    updatedValue=d2s(getTime(),0);

    t="schema_version\t"+lightSchemaVersion+"\n";
    t=t+"descriptor_type\t"+lightProjectDescriptorType+"\n";
    t=t+"tool_version\t"+lightReleaseVersion+"\n";
    t=t+"validation_state\t"+lightValidationState+"\n";
    t=t+"project_id\t"+cleanProjectId+"\n";
    t=t+"project_uid\t"+cleanProjectUid+"\n";
    t=t+"project_name\t"+cleanProjectName+"\n";
    t=t+"sample_name\t"+cleanSampleName+"\n";
    t=t+"experimental_condition\t"+cleanCondition+"\n";
    t=t+"operator_name\t"+cleanOperator+"\n";
    t=t+"project_notes\t"+cleanProjectNotes+"\n";
    t=t+"updated_ms\t"+updatedValue+"\n";
    File.saveString(t,lightProjectFile);

    descriptorOk=lightProjectDescriptorValid(lightProjectFile,lightProjectId,lightProjectUid);
    if(descriptorOk==1)return 1;
    return 0;
}

function lightRegistryHeader() { return "image_id\tdisplay_name\tsource_path\tstored_path\tsha256\tsample_name\tcondition\tmode\tthickness_nm\tscale_x_nm_px\tscale_y_nm_px\tcurrent_revision\tcurrent_run\tupdated_ms\n"; }


function lightEnsureProjectStructure() {
    if(lightProjectRoot=="")return 0;
    rootDir=lightProjectRoot;
    imagesDir=lightJoin(rootDir,"images");
    combinedDir=lightJoin(rootDir,"combined_runs");
    logsDir=lightJoin(rootDir,"logs");
    reg=lightJoin(rootDir,lightRegistryFileName);

    rootMade=lightMakeDir(rootDir);
    imagesMade=lightMakeDir(imagesDir);
    combinedMade=lightMakeDir(combinedDir);
    logsMade=lightMakeDir(logsDir);
    if(rootMade==0||imagesMade==0||combinedMade==0||logsMade==0)return 0;

    if(!File.exists(reg)){
        registryHeaderValue=lightRegistryHeader();
        File.saveString(registryHeaderValue,reg);
    }

    ok=1;
    if(!File.exists(rootDir))ok=0;
    if(!File.exists(imagesDir))ok=0;
    if(!File.exists(combinedDir))ok=0;
    if(!File.exists(logsDir))ok=0;
    if(!File.exists(reg))ok=0;
    return ok;
}

function lightIsRecoverableInterruptedProject(root) {
    if(root=="")return 0;
    js="(function(){var F=Packages.java.io.File,Files=Packages.java.nio.file.Files,CS=Packages.java.nio.charset.StandardCharsets,root=new F('"+jsEscape(root)+"'),suffix='_CavityTEM_Light';function benign(n){return n=='desktop.ini'||n=='Thumbs.db'||n=='.DS_Store';}function emptyDir(d){var a=d.listFiles();if(a==null)return true;for(var i=0;i<a.length;i++)if(!benign(String(a[i].getName())))return false;return true;}try{if(!root.exists()||!root.isDirectory())return '0';var rn=String(root.getName());if(rn.length<suffix.length||rn.substring(rn.length-suffix.length)!=suffix)return '0';if(new F(root,'cavity_light_project.tsv').exists())return '0';var a=root.listFiles();if(a==null)return '0';for(var i=0;i<a.length;i++){var f=a[i],n=String(f.getName());if(benign(n))continue;if(n=='images'||n=='combined_runs'||n=='logs'){if(!f.isDirectory()||!emptyDir(f))return '0';continue;}if(n=='images.tsv'){if(!f.isFile())return '0';var tx=String(new java.lang.String(Files.readAllBytes(f.toPath()),CS.UTF_8)),ls=tx.split(/\\r?\\n/),non=[];for(var j=0;j<ls.length;j++)if(String(ls[j]).trim()!='')non.push(ls[j]);if(non.length>1)return '0';if(non.length==1&&String(non[0]).indexOf('image_id\\t')!=0)return '0';continue;}return '0';}return '1';}catch(ex){return '0';}})();";
    status=""+eval("js",js);ok=0;if(status=="1")ok=1;return ok;
}

function lightCreateSelfTestZip(path) {
    js="(function(){var F=Packages.java.io.File,FOS=Packages.java.io.FileOutputStream,Z=Packages.java.util.zip.ZipOutputStream,E=Packages.java.util.zip.ZipEntry,CS=Packages.java.nio.charset.StandardCharsets,z=null;try{z=new Z(new FOS(new F('"+jsEscape(path)+"')));z.putNextEntry(new E('selftest.txt'));var b=new java.lang.String('Cavity TEM Light R9').getBytes(CS.UTF_8);z.write(b,0,b.length);z.closeEntry();z.close();z=null;return '1';}catch(ex){try{if(z!=null)z.close();}catch(ignore){}return '0';}})();";
    status=""+eval("js",js);ok=0;if(status=="1")ok=1;return ok;
}

function lightDeleteSelfTestTree(path) {
    if(path=="")return 0;
    js="(function(){var F=Packages.java.io.File,root=new F('"+jsEscape(path)+"');function rm(f){if(f.isDirectory()){var a=f.listFiles();if(a!=null)for(var i=0;i<a.length;i++)if(!rm(a[i]))return false;}return f.delete();}try{var n=String(root.getName());if(n.indexOf('CavityTEMLight_R9_SELFTEST_')!=0)return '0';if(!root.exists())return '1';return rm(root)?'1':'0';}catch(ex){return '0';}})();";
    status=""+eval("js",js);ok=0;if(status=="1")ok=1;return ok;
}

function lightFindProjectLocalSource() {
    if(lightImageDir==""||lightSourceSha256=="")return "";dir=lightNormalizeDir(lightJoin(lightImageDir,"source"));if(!File.exists(dir))return "";files=getFileList(dir);
    for(k=0;k<files.length;k++){name=files[k];if(endsWith(name,"/"))continue;candidate=lightJoin(dir,name);ext=lightExtension(candidate);if(ext!="dm3"&&ext!="dm4")continue;sha=IJ.checksum("SHA-256 file",candidate);if(sha==lightSourceSha256){lightSourceStoredPath=normalizeStoredPath(candidate);lightCopySource=1;return lightSourceStoredPath;}}
    return "";
}

function lightActiveImageIdentity() {
    if(nImages()<=0)return "";code="(function(){var imp=Packages.ij.IJ.getImage();function s(k){var v=imp.getProperty(k);return v==null?'':String(v);}return s('CavityTEMLight.ProjectId')+'|'+s('CavityTEMLight.ImageId')+'|'+s('CavityTEMLight.SourceSHA256');})();";return ""+eval("js",code);
}
function lightNumberChanged(a,b) {
    if(isNaN(a)&&isNaN(b))return 0;
    if(isNaN(a)||isNaN(b))return 1;
    difference=abs(a-b);
    if(difference>1e-12)return 1;
    return 0;
}

function lightOpenDmAndRegister() {
    projectOk=lightEnsureProject();if(projectOk==0)return;path=File.openDialog("Selecciona una imagen DM3 o DM4");if(path=="")return;ext=lightExtension(path);if(ext!="dm3"&&ext!="dm4"){showMessage("Formato no admitido","Selecciona un archivo .dm3 o .dm4.");return;}run("ROI Manager...");if(roiManager("count")>0){if(!getBoolean("El ROI Manager contiene objetos. Limpiarlo antes de abrir la nueva imagen?","Limpiar y abrir","Cancelar"))return;roiManager("reset");}
    run("Bio-Formats Importer","open=["+lightEscapeRunPath(path)+"] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");if(nImages()<=0){showMessage("Apertura fallida","Bio-Formats no abrio la imagen.");return;}if(!lightValidateSingle2D())return;lightRegisterActiveImageWithPath(path);
}

function lightRegisterActiveImage() {
    projectOk=lightEnsureProject();if(projectOk==0)return;if(nImages()<=0){showMessage("Sin imagen","Abre primero un DM3/DM4 con Bio-Formats.");return;}if(!lightValidateSingle2D())return;
    run("ROI Manager...");if(roiManager("count")>0){if(!getBoolean("El ROI Manager contiene objetos. Para evitar mezclar imagenes debe vaciarse antes de registrar una imagen nueva.\n\nContinuar?","Vaciar y registrar","Cancelar"))return;roiManager("reset");}
    fileName=getInfo("image.filename");dir=getInfo("image.directory");if(fileName==""||dir==""){showMessage("Origen no verificable","FIJI no informa de la ruta de la imagen activa. Para no asociar por error una ventana con un DM3/DM4 distinto, use 'Abrir DM3/DM4 y registrar'.");return;}path=normalizeStoredPath(lightJoin(dir,fileName));if(!File.exists(path)){showMessage("Origen no verificable","La ruta informada por FIJI no existe:\n"+path+"\n\nUse 'Abrir DM3/DM4 y registrar'.");return;}ext=lightExtension(path);if(ext!="dm3"&&ext!="dm4"){showMessage("Origen no compatible","La imagen activa no esta vinculada directamente a un DM3 o DM4. Use 'Abrir DM3/DM4 y registrar'.");return;}lightRegisterActiveImageWithPath(path);
}



function lightRegisterActiveImageWithPath(path) {
    guardFlag=lightCanonicalProjectGuard("registrar una imagen");
    if(guardFlag==0)return 0;
    path=normalizeStoredPath(path);
    if(!File.exists(path)){showMessage("Fuente no encontrada",path);return 0;}
    ext=lightExtension(path);
    if(ext!="dm3"&&ext!="dm4"){showMessage("Fuente invalida","Debe ser DM3 o DM4.");return 0;}
    sha=IJ.checksum("SHA-256 file",path);
    if(sha=="0"||lengthOf(sha)!=64){showMessage("Hash no disponible","No se pudo calcular SHA-256.");return 0;}
    strippedName=stripExtension(File.getName(path));
    base=lightSanitizeId(strippedName);
    id=base+"_"+substring(sha,0,12);
    imagesRoot=lightJoin(lightProjectRoot,"images");
    imagePath=lightJoin(imagesRoot,id);
    imgDir=lightNormalizeDir(imagePath);
    meta=lightJoin(imgDir,lightImageMetadataFileName);
    exists=File.exists(meta);
    if(exists&&!getBoolean("La imagen ya esta registrada como:\n"+id+"\n\nVincular la imagen activa a ese registro?","Vincular","Cancelar"))return 0;

    imageDirMade=lightMakeDir(imgDir);
    sourceDir=lightJoin(imgDir,"source");
    roiDir=lightJoin(imgDir,"roi_sessions");
    imageLogsDir=lightJoin(imgDir,"logs");
    sourceDirMade=lightMakeDir(sourceDir);
    roiDirMade=lightMakeDir(roiDir);
    logsDirMade=lightMakeDir(imageLogsDir);
    if(imageDirMade==0||sourceDirMade==0||roiDirMade==0||logsDirMade==0){showMessage("Registro no preparado","No se pudo crear la estructura interna de la imagen. No se ha modificado el DM3/DM4.");return 0;}

    lightImageId=id;lightImageDir=imgDir;lightSourceSha256=sha;lightCurrentRunId="";
    imageFileName=File.getName(path);imageDirectory=normalizeStoredPath(File.getDirectory(path));imageChecksum=sha;montageId=id;sourceFirst=imageFileName;sourceLast=imageFileName;sourceImageList=imageFileName;

    if(exists){
        expectedSha=lightKvRead(meta,"source_sha256","");
        if(expectedSha!=""&&expectedSha!=sha){showMessage("Registro incompatible","El registro existente tiene otro SHA-256. No se vinculara la imagen.");return 0;}
        metadataRead=lightReadImageMetadata();
        if(metadataRead==0)return 0;
        lightSourcePath=path;
        sx=lightKvNumber(meta,"active_scale_x_nm_px",NaN);
        sy=lightKvNumber(meta,"active_scale_y_nm_px",NaN);
        if(sx>0&&sy>0){setVoxelSize(sx,sy,1,"nm");updateScaleMaybe();}
        projectConfigured=1;lightProjectLoaded=1;v4ProjectLoaded=0;usePanelsAsMask=0;
        setMetadataImageProperties();
        cur=lightCurrentRevision;
        if(cur!=""&&getBoolean("Cargar la revision vigente "+cur+"?","Cargar ROIs","Mantener sin ROIs"))lightLoadRevisionById(cur);else updateSessionMetadataRoi();
        lightSourcePath=path;imageFileName=File.getName(path);imageDirectory=normalizeStoredPath(File.getDirectory(path));
        metadataWritten=lightWriteImageMetadata();
        registryWritten=0;
        if(metadataWritten==1)registryWritten=lightUpdateRegistry();
        if(metadataWritten==0||registryWritten==0){showMessage("Vinculacion incompleta","Los metadatos canonicos o images.tsv no pudieron verificarse. No se ha modificado el DM3/DM4 ni ninguna revision ROI.\n\nPulse Reparar registro antes de continuar.");return 0;}
        lightAppendLog("IMAGE_RELINKED","source_sha256="+sha+"; path="+path);
        showMessage("Imagen vinculada","ID: "+lightImageId+"\nSHA-256: "+lightSourceSha256+"\n\nSe conservaron la escala, el espesor y la configuracion registrados.");
        lightShowPanel();return 1;
    }

    lightSourcePath=path;lightSourceStoredPath="";lightCopySource=0;
    copy=getBoolean("Quieres copiar el DM3/DM4 dentro del proyecto?\n\nEl original nunca se modifica.","Copiar fuente","Solo referenciar");
    if(copy){
        dest=lightJoin(sourceDir,File.getName(path));
        result=lightCopyFileVerified(path,dest,sha);
        if(result==1){lightSourceStoredPath=dest;lightCopySource=1;}
        else showMessage("Copia no aceptada","No se pudo verificar la copia; se mantiene solo la referencia al original.");
    }
    lightImageMode="without_surface";lightThicknessNm=0;lightThicknessUncertaintyNm=0;lightThicknessMethod="not_provided";lightThicknessNotes="";lightUseWholeImage=0;lightIncludeUncertain=0;lightCurrentRevision="";
    lightCaptureOriginalScale();projectConfigured=1;lightProjectLoaded=1;v4ProjectLoaded=0;usePanelsAsMask=0;
    setMetadataImageProperties();updateSessionMetadataRoi();
    metadataWritten=lightWriteImageMetadata();
    registryWritten=0;
    if(metadataWritten==1)registryWritten=lightUpdateRegistry();
    if(metadataWritten==0||registryWritten==0){
        showMessage("Registro incompleto","La carpeta y, en su caso, la copia verificada de la fuente se conservan, pero image_metadata.tsv o images.tsv no superaron la verificacion.\n\nNo empiece a medir. Pulse Reparar registro y seleccione despues la imagen ya registrada.");
        return 0;
    }
    lightAppendLog("IMAGE_REGISTERED","source_sha256="+sha+"; path="+path+"; copied="+lightCopySource);
    lightConfigureCurrentImage();
    showMessage("Imagen registrada","ID: "+lightImageId+"\nSHA-256: "+lightSourceSha256+"\nModo: "+lightImageMode+"\n\nCada imagen mantiene ROIs, escala, espesor y revisiones independientes.");
    lightShowPanel();return 1;
}

function lightValidateSingle2D() { getDimensions(w,h,c,z,t);if(c!=1||z!=1||t!=1){showMessage("Dataset no compatible","Esta version Light exige una unica imagen 2D. Dimensiones: C="+c+", Z="+z+", T="+t+".");return 0;}return 1; }

function lightRegistryHasDataRows() {
    reg=lightJoin(lightProjectRoot,lightRegistryFileName);
    if(!File.exists(reg))return 0;
    registryText=File.openAsString(reg);
    registryLines=split(registryText,"\n");
    if(registryLines.length<2)return 0;
    for(registryIndex=1;registryIndex<registryLines.length;registryIndex++){
        registryLine=replace(registryLines[registryIndex],"\r","");
        registryLine=String.trim(registryLine);
        if(registryLine!="")return 1;
    }
    return 0;
}

function lightSelectProjectImage() {
    projectOk=lightEnsureProject();
    if(projectOk==0)return;

    hasRows=lightRegistryHasDataRows();
    if(hasRows==0){
        repairText=lightRepairImageRegistryCore(1);
        if(!startsWith(repairText,"OK|")){
            showMessage("Sin imagenes seleccionables","El registro images.tsv no contiene filas utilizables y no pudo reconstruirse automaticamente.\n\nPulse Reparar registro o revise la carpeta images.");
            return;
        }
    }

    id=lightChooseRegistryImages(0);
    if(id=="")return;
    lightOpenRegisteredImageById(id);
}

function lightOpenRegisteredImageById(id) {
    imagesRoot=lightJoin(lightProjectRoot,"images");
    imagePath=lightJoin(imagesRoot,id);
    canonicalImageDir=lightNormalizeDir(imagePath);
    meta=lightJoin(canonicalImageDir,lightImageMetadataFileName);
    if(!File.exists(meta)){showMessage("Registro incompleto","No existe: "+meta);return 0;}
    lightImageId=id;lightImageDir=canonicalImageDir;
    metadataRead=lightReadImageMetadata();
    if(metadataRead==0)return 0;
    expectedProjectId=lightProjectId;expectedProjectUid=lightProjectUid;expectedImageId=lightImageId;expectedSha=lightSourceSha256;expectedRoot=lightProjectRoot;expectedImageDir=lightImageDir;
    path=lightResolveSourcePath();if(path=="")return 0;resolvedPath=normalizeStoredPath(path);resolvedSource=lightSourcePath;resolvedStored=lightSourceStoredPath;resolvedCopy=lightCopySource;
    actualSha=IJ.checksum("SHA-256 file",resolvedPath);if(actualSha!=expectedSha){showMessage("Integridad bloqueada","El archivo localizado no coincide con el SHA-256 registrado.\n\nEsperado: "+expectedSha+"\nActual: "+actualSha);return 0;}
    run("ROI Manager...");if(roiManager("count")>0){if(!getBoolean("Limpiar el ROI Manager antes de cargar la imagen seleccionada?","Limpiar","Cancelar"))return 0;roiManager("reset");}
    run("Bio-Formats Importer","open=["+lightEscapeRunPath(resolvedPath)+"] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");if(nImages()<=0){showMessage("Apertura fallida","Bio-Formats no abrio la imagen registrada.");return 0;}if(!lightValidateSingle2D())return 0;
    sx=lightKvNumber(meta,"active_scale_x_nm_px",lightOriginalScaleNmX);sy=lightKvNumber(meta,"active_scale_y_nm_px",lightOriginalScaleNmY);if(sx>0&&sy>0){setVoxelSize(sx,sy,1,"nm");updateScaleMaybe();}
    imageFileName=File.getName(resolvedPath);imageDirectory=normalizeStoredPath(File.getDirectory(resolvedPath));imageChecksum=expectedSha;montageId=expectedImageId;sourceFirst=imageFileName;sourceLast=imageFileName;sourceImageList=imageFileName;
    lightProjectId=expectedProjectId;lightProjectUid=expectedProjectUid;lightImageId=expectedImageId;lightSourceSha256=expectedSha;lightProjectRoot=expectedRoot;lightImageDir=expectedImageDir;lightSourcePath=resolvedSource;lightSourceStoredPath=resolvedStored;lightCopySource=resolvedCopy;setMetadataImageProperties();projectConfigured=1;lightProjectLoaded=1;v4ProjectLoaded=0;
    cur=lightKvRead(meta,"current_revision","");lightCurrentRevision=cur;if(cur!=""&&getBoolean("Cargar la revision vigente "+cur+"?","Cargar ROIs","Abrir sin ROIs")){revisionLoaded=lightLoadRevisionById(cur);if(revisionLoaded==0)return 0;}else updateSessionMetadataRoi();
    lightProjectId=expectedProjectId;lightProjectUid=expectedProjectUid;lightImageId=expectedImageId;lightSourceSha256=expectedSha;lightProjectRoot=expectedRoot;lightImageDir=expectedImageDir;lightSourcePath=resolvedSource;lightSourceStoredPath=resolvedStored;lightCopySource=resolvedCopy;setMetadataImageProperties();
    metadataWritten=lightWriteImageMetadata();
    registryWritten=0;
    if(metadataWritten==1)registryWritten=lightUpdateRegistry();
    if(metadataWritten==0||registryWritten==0){showMessage("Apertura incompleta","La imagen se ha abierto, pero no se pudo verificar su metadato canonico o images.tsv. No realice medidas hasta pulsar Reparar registro.");return 0;}
    lightAppendLog("IMAGE_OPENED","revision="+lightCurrentRevision+"; opened_path="+resolvedPath);lightShowPanel();return 1;
}

function lightConfigureCurrentImage() {
    imageOk=lightEnsureCurrentImage();if(imageOk==0)return;
    oldMode=lightImageMode;oldThickness=lightThicknessNm;oldUncertainty=lightThicknessUncertaintyNm;oldMethod=lightThicknessMethod;oldNotes=lightThicknessNotes;oldInclude=lightIncludeUncertain;oldExclude=excludeNegativeDepth;
    modes=newArray("Sin superficie","Con superficie");defaultMode="Sin superficie";if(lightImageMode=="with_surface")defaultMode="Con superficie";methods=newArray("not_provided","EELS","CBED","geometric_estimate","nominal_value","literature","other");
    Dialog.create("Configurar imagen independiente");Dialog.addChoice("Modo de analisis:",modes,defaultMode);Dialog.addNumber("Espesor de lamina (nm; 0 si no se conoce):",lightThicknessNm);Dialog.addNumber("Incertidumbre del espesor (nm):",lightThicknessUncertaintyNm);Dialog.addChoice("Metodo de espesor:",methods,lightThicknessMethod);Dialog.addString("Notas del espesor:",lightThicknessNotes,45);Dialog.addCheckbox("Incluir cavidades dudosas en el recuento principal",lightIncludeUncertain);Dialog.addMessage("La densidad volumetrica se calcula como valor nominal N/(A*t). No se aplican correcciones ocultas.");Dialog.show();
    m=Dialog.getChoice();newMode="without_surface";if(m=="Con superficie")newMode="with_surface";newThickness=Dialog.getNumber();newUncertainty=Dialog.getNumber();newMethod=Dialog.getChoice();newNotes=Dialog.getString();newInclude=Dialog.getCheckbox();if(newThickness<0)newThickness=0;if(newUncertainty<0)newUncertainty=0;
    changed=0;
    if(newMode!=oldMode)changed=1;
    thicknessChanged=lightNumberChanged(newThickness,oldThickness);if(thicknessChanged==1)changed=1;
    uncertaintyChanged=lightNumberChanged(newUncertainty,oldUncertainty);if(uncertaintyChanged==1)changed=1;
    if(newMethod!=oldMethod)changed=1;
    if(newNotes!=oldNotes)changed=1;
    if(newInclude!=oldInclude)changed=1;
    objects=lightScientificObjectCount();
    if(changed==1&&objects>0){if(!getBoolean("La configuracion cuantitativa cambiara y se recalcularan las ROIs. Se guardara una revision nueva inmutable.\n\nContinuar?","Cambiar y revisar","Cancelar"))return;if(!quantitativeRevisionPreflight())return;}
    lightImageMode=newMode;lightThicknessNm=newThickness;lightThicknessUncertaintyNm=newUncertainty;lightThicknessMethod=newMethod;lightThicknessNotes=newNotes;lightIncludeUncertain=newInclude;if(lightImageMode=="without_surface")excludeNegativeDepth=0;else excludeNegativeDepth=1;
    syncAllObjects(0);updateSessionMetadataRoi();
    metaWritten=lightWriteImageMetadata();registryWritten=lightUpdateRegistry();
    if(metaWritten==0||registryWritten==0){lightImageMode=oldMode;lightThicknessNm=oldThickness;lightThicknessUncertaintyNm=oldUncertainty;lightThicknessMethod=oldMethod;lightThicknessNotes=oldNotes;lightIncludeUncertain=oldInclude;excludeNegativeDepth=oldExclude;syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();showMessage("Configuracion no aplicada","No se pudieron verificar los metadatos o el registro en la raiz canonica. Se restauraron los valores anteriores.");return;}
    rev="";
    if(changed==1&&objects>0){rev=lightSaveRevisionCore(0);if(rev==""){lightImageMode=oldMode;lightThicknessNm=oldThickness;lightThicknessUncertaintyNm=oldUncertainty;lightThicknessMethod=oldMethod;lightThicknessNotes=oldNotes;lightIncludeUncertain=oldInclude;excludeNegativeDepth=oldExclude;syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();showMessage("Configuracion restaurada","No se pudo guardar la revision asociada. Se restauraron los valores anteriores.");return;}}
    lightAppendLog("IMAGE_CONFIGURED","mode="+lightImageMode+"; thickness_nm="+lightNum(lightThicknessNm)+"; uncertainty_nm="+lightNum(lightThicknessUncertaintyNm)+"; method="+lightThicknessMethod+"; include_uncertain="+lightIncludeUncertain+"; revision="+rev);lightShowPanel();
}

function lightShowCurrentInfo() {
    msg="Cavity TEM Light "+lightReleaseVersion+"\n\nProyecto: "+lightProjectName+"\nProject ID: "+lightProjectId+"\nProject UID: "+lightProjectUid+"\nRaiz: "+lightProjectRoot+"\n\nImagen ID: "+lightImageId+"\nFuente: "+lightSourcePath+"\nCopia: "+lightSourceStoredPath+"\nSHA-256: "+lightSourceSha256+"\nModo: "+lightImageMode+"\nRevision vigente: "+lightCurrentRevision+"\n";
    if(nImages()>0){scaleInfoOk=updateScaleMaybe();if(scaleInfoOk==1)msg=msg+"Escala activa: "+d2s(nmPerPixelX,9)+" x "+d2s(nmPerPixelY,9)+" nm/px\n";else msg=msg+"Escala activa: no valida\n";}else msg=msg+"Escala activa: no valida\n";
    msg=msg+"Escala confirmada: "+lightScaleConfirmed+" ("+lightScaleOrigin+")\nEspesor: "+d2s(lightThicknessNm,3)+" nm; metodo="+lightThicknessMethod+"\nArea completa confirmada: "+lightUseWholeImage+"\n\nInteraccion R9:\n- Diametro activo: "+d2s(activeDiameterNm,4)+" nm\n- Vista previa: "+lightInteractivePreviewEnabled+"\n- Sensibilidad: "+d2s(lightInteractiveResizeStepNm,4)+" nm/paso\n- Etiquetas exactas ROI Manager: "+showRoiLabels+"\n- Controlador: "+lightInteractiveControllerStatus+"\n\nEstado: "+lightValidationState;
    showMessage("Informacion y trazabilidad",msg);
}

function lightCaptureOriginalScale() { getPixelSize(u,pw,ph);factor=unitToNmFactor(u);lightOriginalScaleUnit=u;if(factor>0&&pw>0&&ph>0){lightOriginalScaleNmX=pw*factor;lightOriginalScaleNmY=ph*factor;setVoxelSize(lightOriginalScaleNmX,lightOriginalScaleNmY,1,"nm");updateScaleMaybe();scaleDefined=1;lightScaleOrigin="bioformats_metadata";lightScaleConfirmed=0;}else{lightOriginalScaleNmX=NaN;lightOriginalScaleNmY=NaN;scaleDefined=0;lightScaleConfirmed=0;} }

function lightConfirmImageScale() {
    imageOk=lightEnsureCurrentImage();if(imageOk==0)return;if(!updateScaleMaybe()){showMessage("Escala no valida","Bio-Formats no ha dejado una calibracion fisica reconocible. Introduce nm/px o calibra con una linea.");return;}
    msg="Escala detectada: "+d2s(nmPerPixelX,12)+" x "+d2s(nmPerPixelY,12)+" nm/px\n\nConfirmas que es la escala correcta para esta imagen?";if(!getBoolean(msg,"Confirmar","Cancelar"))return;
    lightScaleConfirmed=1;if(lightScaleOrigin=="bioformats_metadata")lightScaleOrigin="bioformats_metadata_confirmed";scaleDefined=1;updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();lightAppendLog("SCALE_CONFIRMED","x_nm_px="+lightNum(nmPerPixelX)+"; y_nm_px="+lightNum(nmPerPixelY)+"; origin="+lightScaleOrigin);showStatus("Escala confirmada.");lightRefreshPanel();
}
function lightSetScaleNumerically() {
    imageOk=lightEnsureCurrentImage();if(imageOk==0)return;oldValid=updateScaleMaybe();oldX=nmPerPixelX;oldY=nmPerPixelY;oldOrigin=lightScaleOrigin;oldConfirmed=lightScaleConfirmed;defaultX=1;defaultY=1;if(oldValid){defaultX=oldX;defaultY=oldY;}
    Dialog.create("Escala manual");Dialog.addNumber("nm/px en X:",defaultX);Dialog.addNumber("nm/px en Y:",defaultY);Dialog.addString("Origen/nota:","manual_numeric",35);Dialog.show();sx=Dialog.getNumber();sy=Dialog.getNumber();note=Dialog.getString();if(sx<=0||sy<=0){showMessage("Escala invalida","Los valores deben ser positivos.");return;}
    changed=0;if(oldValid==0)changed=1;if(lightNumberChanged(oldX,sx)==1)changed=1;if(lightNumberChanged(oldY,sy)==1)changed=1;
    objects=lightScientificObjectCount();if(changed==1&&objects>0){if(!getBoolean("Cambiar la escala recalculara la geometria fisica de "+objects+" objetos y creara una revision nueva inmutable.\n\nContinuar?","Cambiar y revisar","Cancelar"))return;if(!quantitativeRevisionPreflight())return;}
    setVoxelSize(sx,sy,1,"nm");updateScaleMaybe();scaleDefined=1;lightScaleConfirmed=1;lightScaleOrigin=note;if(lightScaleOrigin=="")lightScaleOrigin="manual_numeric";syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();rev="";
    if(changed==1&&objects>0){rev=lightSaveRevisionCore(0);if(rev==""){if(oldValid)setVoxelSize(oldX,oldY,1,"nm");lightScaleOrigin=oldOrigin;lightScaleConfirmed=oldConfirmed;updateScaleMaybe();syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();showMessage("Escala restaurada","No se pudo guardar la revision vinculada al cambio. Se restauro la escala anterior.");return;}}
    lightAppendLog("SCALE_SET_NUMERIC","x_nm_px="+lightNum(sx)+"; y_nm_px="+lightNum(sy)+"; origin="+lightScaleOrigin+"; revision="+rev);showStatus("Escala manual aplicada y confirmada.");lightRefreshPanel();
}

function lightAfterManualScale(origin) { if(nImages()<=0)return;if(updateScaleMaybe()){scaleDefined=1;lightScaleConfirmed=1;lightScaleOrigin=origin;syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();lightAppendLog("SCALE_SET_EXTERNAL","origin="+origin+"; x_nm_px="+lightNum(nmPerPixelX)+"; y_nm_px="+lightNum(nmPerPixelY));lightRefreshPanel();} }
function lightCalibrateScaleFromLine() {
    imageOk=lightEnsureCurrentImage();if(imageOk==0)return;oldValid=updateScaleMaybe();oldX=nmPerPixelX;oldY=nmPerPixelY;oldOrigin=lightScaleOrigin;oldConfirmed=lightScaleConfirmed;objects=lightScientificObjectCount();if(objects>0&&!quantitativeRevisionPreflight())return;
    calibrateScaleFromLine();if(!updateScaleMaybe())return;changed=0;if(oldValid==0)changed=1;if(lightNumberChanged(oldX,nmPerPixelX)==1)changed=1;if(lightNumberChanged(oldY,nmPerPixelY)==1)changed=1;if(changed==0)return;
    lightScaleConfirmed=1;lightScaleOrigin="manual_line";scaleDefined=1;syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();rev="";
    if(objects>0){rev=lightSaveRevisionCore(0);if(rev==""){if(oldValid)setVoxelSize(oldX,oldY,1,"nm");lightScaleOrigin=oldOrigin;lightScaleConfirmed=oldConfirmed;updateScaleMaybe();syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();showMessage("Escala restaurada","No se pudo guardar la revision vinculada a la calibracion. Se restauro la escala anterior.");return;}}
    lightAppendLog("SCALE_SET_LINE","x_nm_px="+lightNum(nmPerPixelX)+"; y_nm_px="+lightNum(nmPerPixelY)+"; revision="+rev);lightRefreshPanel();
}

function lightVerifyScale() { if(nImages()<=0){showMessage("Sin imagen","No hay imagen activa.");return;}getPixelSize(u,pw,ph);msg="Calibracion de ImageJ: "+d2s(pw,12)+" x "+d2s(ph,12)+" "+u+"/px\nEscala interna: "+d2s(nmPerPixelX,12)+" x "+d2s(nmPerPixelY,12)+" nm/px\nConfirmada: "+lightScaleConfirmed+"\nOrigen: "+lightScaleOrigin+"\nOriginal Bio-Formats: "+d2s(lightOriginalScaleNmX,12)+" x "+d2s(lightOriginalScaleNmY,12)+" nm/px";showMessage("Verificacion de escala",msg); }

function lightUseWholeImageAsArea() {
    imageOk=lightEnsureCurrentImage();if(imageOk==0)return;if(!getBoolean("Confirmas que toda la imagen representa material observable valido?\n\nLas zonas excluidas seguiran restando area.","Confirmar toda la imagen","Cancelar"))return;lightUseWholeImage=1;syncAllObjects(0);updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();lightAppendLog("WHOLE_IMAGE_AREA_CONFIRMED","exclusions="+countTypeFast("exclusion"));showStatus("Toda la imagen confirmada como area base.");
}

function lightAddAnalysisMasks() { lightUseWholeImage=0;addAnalysisMaskRoi(); }
function lightDefineSurface() { imageOk=lightEnsureCurrentImage();if(imageOk==0)return;if(lightImageMode!="with_surface"){if(!getBoolean("La imagen esta configurada sin superficie. Cambiarla a modo con superficie?","Cambiar modo","Cancelar"))return;lightImageMode="with_surface";excludeNegativeDepth=1;}defineSurfaceReference();lightWriteImageMetadata();lightUpdateRegistry(); }
function lightSetActiveDiameter() {
    Dialog.create("Diametro activo R9");
    Dialog.addNumber("Diametro (nm):", activeDiameterNm);
    Dialog.show();
    d = Dialog.getNumber();
    if (d <= 0) { showMessage("Valor invalido", "El diametro debe ser mayor que cero."); return; }
    activeDiameterNm = d;
    lightInteractivePushState(lightInteractiveMode);
    updateSessionMetadataRoi();
    lightRefreshPanel();
    showStatus("Diametro activo: "+d2s(activeDiameterNm,3)+" nm. El circulo del cursor se actualiza inmediatamente.");
}

function lightAddEllipseCavityFromSelection() {
    if(!v4PrepareImageForMeasurement(1))return;st=selectionType;if(st!=1){showMessage("Seleccion no compatible","Dibuja primero una seleccion oval/eliptica con la herramienta Oval.");return;}run("ROI Manager...");cavityCounter++;id="CAV_"+IJ.pad(cavityCounter,6);Roi.setName(id);Roi.setProperty("Type","cavity");Roi.setProperty("Cavity_id",id);Roi.setProperty("Cavity_serial",d2s(cavityCounter,0));Roi.setProperty("Measurement_source","ellipse_manual");Roi.setProperty("Manual_excluded","0");Roi.setProperty("Cavity_class",activeCavityClass);Roi.setProperty("Cavity_class_label",activeCavityClassLabel);Roi.setProperty("Cavity_confidence",activeCavityConfidence);Roi.setProperty("Duplicate_status","clear");Roi.setProperty("Duplicate_partners","");setCommonObjectProperties();roiManager("add");idx=roiManager("count")-1;syncCavityAtIndex(idx);checkNewCavityForDuplicates(idx);undoKind="add";undoObjectId=id;undoAvailable=1;showAllRois();updateSessionMetadataRoi();showStatus("Elipse registrada: "+id+".");
}

function lightGroupForCavityClass(c) { c=normalizeCavityClass(c);if(c=="uncertain")return 2;if(c=="possible_artifact")return 3;return 1; }
function lightGroupForFeatureType(t) { if(t=="dislocation")return 4;if(t=="grain_boundary")return 5;if(t=="surface_reference")return 6;if(t=="interface")return 7;if(t=="analysis_mask")return 8;if(t=="exclusion")return 9;return 0; }
function lightWriteImageMetadata() {
    prepared=lightPrepareImageContextForWrite(1);
    if(prepared==0)return 0;

    meta=lightJoin(lightImageDir,lightImageMetadataFileName);
    sx=NaN;
    sy=NaN;
    if(nImages()>0){
        scaleUpdated=updateScaleMaybe();
        if(scaleUpdated==1){sx=nmPerPixelX;sy=nmPerPixelY;}
    }

    cleanProjectId=lightTsvClean(lightProjectId);
    cleanProjectUid=lightTsvClean(lightProjectUid);
    cleanProjectRoot=lightTsvClean(lightProjectRoot);
    cleanProjectFile=lightTsvClean(lightProjectFile);
    cleanImageId=lightTsvClean(lightImageId);
    cleanSourcePath=lightTsvClean(lightSourcePath);
    cleanStoredPath=lightTsvClean(lightSourceStoredPath);
    cleanSample=lightTsvClean(sampleName);
    cleanCondition=lightTsvClean(experimentalCondition);
    cleanOperator=lightTsvClean(operatorName);
    cleanVoltage=lightTsvClean(microscopeVoltage);
    cleanTemperature=lightTsvClean(specimenTemperature);
    cleanThicknessMethod=lightTsvClean(lightThicknessMethod);
    cleanThicknessNotes=lightTsvClean(lightThicknessNotes);
    cleanOriginalUnit=lightTsvClean(lightOriginalScaleUnit);
    cleanScaleOrigin=lightTsvClean(lightScaleOrigin);
    cleanRevision=lightTsvClean(lightCurrentRevision);
    cleanRun=lightTsvClean(lightCurrentRunId);

    thicknessText=lightNum(lightThicknessNm);
    uncertaintyText=lightNum(lightThicknessUncertaintyNm);
    originalXText=lightNum(lightOriginalScaleNmX);
    originalYText=lightNum(lightOriginalScaleNmY);
    activeXText=lightNum(sx);
    activeYText=lightNum(sy);
    activeDiameterText=lightNum(activeDiameterNm);
    bandWidthText=lightNum(bandNm);
    histogramText=lightNum(lightHistogramBinNm);
    distanceBinText=lightNum(lightFeatureDistanceBinNm);
    updatedText=d2s(getTime(),0);

    t="schema_version\t"+lightSchemaVersion+"\n";
    t=t+"descriptor_type\t"+lightImageDescriptorType+"\n";
    t=t+"tool_version\t"+lightReleaseVersion+"\n";
    t=t+"validation_state\t"+lightValidationState+"\n";
    t=t+"project_id\t"+cleanProjectId+"\n";
    t=t+"project_uid\t"+cleanProjectUid+"\n";
    t=t+"project_root\t"+cleanProjectRoot+"\n";
    t=t+"project_file\t"+cleanProjectFile+"\n";
    t=t+"image_id\t"+cleanImageId+"\n";
    t=t+"source_path\t"+cleanSourcePath+"\n";
    t=t+"stored_path\t"+cleanStoredPath+"\n";
    t=t+"source_sha256\t"+lightSourceSha256+"\n";
    t=t+"copy_source\t"+lightCopySource+"\n";
    t=t+"sample_name\t"+cleanSample+"\n";
    t=t+"experimental_condition\t"+cleanCondition+"\n";
    t=t+"operator_name\t"+cleanOperator+"\n";
    t=t+"microscope_voltage\t"+cleanVoltage+"\n";
    t=t+"specimen_temperature\t"+cleanTemperature+"\n";
    t=t+"image_mode\t"+lightImageMode+"\n";
    t=t+"foil_thickness_nm\t"+thicknessText+"\n";
    t=t+"thickness_uncertainty_nm\t"+uncertaintyText+"\n";
    t=t+"thickness_method\t"+cleanThicknessMethod+"\n";
    t=t+"thickness_notes\t"+cleanThicknessNotes+"\n";
    t=t+"original_scale_x_nm_px\t"+originalXText+"\n";
    t=t+"original_scale_y_nm_px\t"+originalYText+"\n";
    t=t+"original_scale_unit\t"+cleanOriginalUnit+"\n";
    t=t+"active_scale_x_nm_px\t"+activeXText+"\n";
    t=t+"active_scale_y_nm_px\t"+activeYText+"\n";
    t=t+"scale_origin\t"+cleanScaleOrigin+"\n";
    t=t+"scale_confirmed\t"+lightScaleConfirmed+"\n";
    t=t+"use_whole_image\t"+lightUseWholeImage+"\n";
    t=t+"include_uncertain\t"+lightIncludeUncertain+"\n";
    t=t+"active_diameter_nm\t"+activeDiameterText+"\n";
    t=t+"band_width_nm\t"+bandWidthText+"\n";
    t=t+"band_count\t"+bandCount+"\n";
    t=t+"exclude_negative_depth\t"+excludeNegativeDepth+"\n";
    t=t+"histogram_bin_nm\t"+histogramText+"\n";
    t=t+"feature_distance_bin_nm\t"+distanceBinText+"\n";
    t=t+"interactive_preview\t"+lightInteractivePreviewEnabled+"\n";
    t=t+"interactive_resize_step_nm\t"+lightNum(lightInteractiveResizeStepNm)+"\n";
    t=t+"show_roi_labels\t"+showRoiLabels+"\n";
    t=t+"exact_label_mode\troi_name_v1\n";
    t=t+"current_revision\t"+cleanRevision+"\n";
    t=t+"current_run\t"+cleanRun+"\n";
    if(nImages()>0){
        widthValue=getWidth();
        heightValue=getHeight();
        t=t+"width_px\t"+widthValue+"\n";
        t=t+"height_px\t"+heightValue+"\n";
    }
    t=t+"updated_ms\t"+updatedText+"\n";

    File.saveString(t,meta);
    metaMatches=lightImageMetadataMatches(meta,lightImageId,lightSourceSha256);
    if(metaMatches==1)return 1;
    return 0;
}
function lightReadImageMetadata() {
    guardOk=lightCanonicalProjectGuard("leer metadatos de imagen");
    if(guardOk==0)return 0;

    imagesRoot=lightJoin(lightProjectRoot,"images");
    imagePath=lightJoin(imagesRoot,lightImageId);
    expectedDir=lightNormalizeDir(imagePath);
    meta=lightJoin(expectedDir,lightImageMetadataFileName);

    metaMatches=lightImageMetadataMatches(meta,lightImageId,"");
    if(metaMatches==0){
        showMessage("Metadato rechazado","El archivo no coincide con el proyecto y la imagen seleccionados:\n"+meta);
        return 0;
    }

    lightImageDir=expectedDir;

    sourcePathValue=lightKvRead(meta,"source_path",lightSourcePath);
    lightSourcePath=normalizeStoredPath(sourcePathValue);
    storedPathValue=lightKvRead(meta,"stored_path",lightSourceStoredPath);
    lightSourceStoredPath=normalizeStoredPath(storedPathValue);
    lightSourceSha256=lightKvRead(meta,"source_sha256",lightSourceSha256);

    copyValue=lightKvNumber(meta,"copy_source",0);
    lightCopySource=round(copyValue);
    sampleName=lightKvRead(meta,"sample_name",sampleName);
    experimentalCondition=lightKvRead(meta,"experimental_condition",experimentalCondition);
    operatorName=lightKvRead(meta,"operator_name",operatorName);
    microscopeVoltage=lightKvRead(meta,"microscope_voltage",microscopeVoltage);
    specimenTemperature=lightKvRead(meta,"specimen_temperature",specimenTemperature);
    lightImageMode=lightKvRead(meta,"image_mode","without_surface");
    lightThicknessNm=lightKvNumber(meta,"foil_thickness_nm",0);
    lightThicknessUncertaintyNm=lightKvNumber(meta,"thickness_uncertainty_nm",0);
    lightThicknessMethod=lightKvRead(meta,"thickness_method","not_provided");
    lightThicknessNotes=lightKvRead(meta,"thickness_notes","");
    lightOriginalScaleNmX=lightKvNumber(meta,"original_scale_x_nm_px",NaN);
    lightOriginalScaleNmY=lightKvNumber(meta,"original_scale_y_nm_px",NaN);
    lightOriginalScaleUnit=lightKvRead(meta,"original_scale_unit","");
    lightScaleOrigin=lightKvRead(meta,"scale_origin","bioformats_metadata");

    scaleConfirmedValue=lightKvNumber(meta,"scale_confirmed",0);
    lightScaleConfirmed=round(scaleConfirmedValue);
    wholeImageValue=lightKvNumber(meta,"use_whole_image",0);
    lightUseWholeImage=round(wholeImageValue);
    includeValue=lightKvNumber(meta,"include_uncertain",0);
    lightIncludeUncertain=round(includeValue);
    activeDiameterNm=lightKvNumber(meta,"active_diameter_nm",activeDiameterNm);
    bandNm=lightKvNumber(meta,"band_width_nm",bandNm);
    bandCountValue=lightKvNumber(meta,"band_count",bandCount);
    bandCount=round(bandCountValue);
    excludeValue=lightKvNumber(meta,"exclude_negative_depth",excludeNegativeDepth);
    excludeNegativeDepth=round(excludeValue);
    lightHistogramBinNm=lightKvNumber(meta,"histogram_bin_nm",lightHistogramBinNm);
    lightFeatureDistanceBinNm=lightKvNumber(meta,"feature_distance_bin_nm",lightFeatureDistanceBinNm);
    lightInteractivePreviewEnabled=round(lightKvNumber(meta,"interactive_preview",lightInteractivePreviewEnabled));
    lightInteractiveResizeStepNm=lightKvNumber(meta,"interactive_resize_step_nm",lightInteractiveResizeStepNm);
    showRoiLabels=round(lightKvNumber(meta,"show_roi_labels",showRoiLabels));
    if(lightInteractiveResizeStepNm<lightInteractiveResizeMinNm)lightInteractiveResizeStepNm=lightInteractiveResizeMinNm;
    if(lightInteractiveResizeStepNm>lightInteractiveResizeMaxNm)lightInteractiveResizeStepNm=lightInteractiveResizeMaxNm;
    lightCurrentRevision=lightKvRead(meta,"current_revision","");
    lightCurrentRunId=lightKvRead(meta,"current_run","");

    if(bandNm<=0)bandNm=50;
    if(bandCount<1)bandCount=1;
    if(lightHistogramBinNm<=0)lightHistogramBinNm=1;
    if(lightFeatureDistanceBinNm<=0)lightFeatureDistanceBinNm=10;
    return 1;
}
function lightUpdateRegistry() {
    if(lightProjectRoot==""||lightImageId=="")return 0;
    prepared=lightPrepareImageContextForWrite(1);
    if(prepared==0)return 0;

    reg=lightJoin(lightProjectRoot,lightRegistryFileName);
    if(!File.exists(reg)){
        headerValue=lightRegistryHeader();
        File.saveString(headerValue,reg);
    }

    sx="";
    sy="";
    if(nImages()>0){
        scaleUpdated=updateScaleMaybe();
        if(scaleUpdated==1){
            sx=lightNum(nmPerPixelX);
            sy=lightNum(nmPerPixelY);
        }
    }

    cleanImageId=lightTsvClean(lightImageId);
    cleanImageName=lightTsvClean(imageFileName);
    cleanSourcePath=lightTsvClean(lightSourcePath);
    cleanStoredPath=lightTsvClean(lightSourceStoredPath);
    cleanSample=lightTsvClean(sampleName);
    cleanCondition=lightTsvClean(experimentalCondition);
    cleanRevision=lightTsvClean(lightCurrentRevision);
    cleanRun=lightTsvClean(lightCurrentRunId);
    thicknessText=lightNum(lightThicknessNm);
    timestampText=d2s(getTime(),0);

    row=""+cleanImageId+"\t"+cleanImageName+"\t"+cleanSourcePath+"\t"+cleanStoredPath+"\t"+lightSourceSha256+"\t"+cleanSample+"\t"+cleanCondition+"\t"+lightImageMode+"\t"+thicknessText+"\t"+sx+"\t"+sy+"\t"+cleanRevision+"\t"+cleanRun+"\t"+timestampText;
    js="(function(){var Files=Packages.java.nio.file.Files,Paths=Packages.java.nio.file.Paths,CS=Packages.java.nio.charset.StandardCharsets,p='"+jsEscape(reg)+"',id='"+jsEscape(lightImageId)+"',row='"+jsEscape(row)+"';var f=Paths.get(p),text=Files.exists(f)?String(new java.lang.String(Files.readAllBytes(f),CS.UTF_8)):'';var ls=text.split(/\\r?\\n/),out=[],done=false;for(var i=0;i<ls.length;i++){if(!ls[i])continue;if(i==0&&ls[i].indexOf('image_id\\t')==0){out.push(ls[i]);continue;}var k=ls[i].indexOf('\\t');if(k>0&&ls[i].slice(0,k)==id){out.push(row);done=true;}else out.push(ls[i]);}if(!done)out.push(row);Files.write(f,new java.lang.String(out.join('\\n')+'\\n').getBytes(CS.UTF_8));return 'OK';})();";
    registryResult=eval("js",js);
    if(registryResult=="OK")return 1;
    repairText=lightRepairImageRegistryCore(1);
    if(startsWith(repairText,"OK|"))return 1;
    return 0;
}

function lightResolveSourcePath() {
    if(lightSourceStoredPath!=""&&File.exists(lightSourceStoredPath)){sha=IJ.checksum("SHA-256 file",lightSourceStoredPath);if(sha==lightSourceSha256)return lightSourceStoredPath;showMessage("Copia local alterada","La copia del proyecto no coincide con el SHA-256 registrado y no se utilizara.");}
    if(lightSourcePath!=""&&File.exists(lightSourcePath)){sha=IJ.checksum("SHA-256 file",lightSourcePath);if(sha==lightSourceSha256)return lightSourcePath;showMessage("Fuente alterada","La ruta original existe, pero su SHA-256 ya no coincide. Debe localizarse el archivo correcto.");}
    local=lightFindProjectLocalSource();if(local!=""){lightAppendLog("SOURCE_LOCAL_RECOVERED","path="+local);return local;}
    path=File.openDialog("No se encuentra la fuente. Localiza el DM3/DM4 original");if(path=="")return "";ext=lightExtension(path);if(ext!="dm3"&&ext!="dm4"){showMessage("Archivo rechazado","Debe seleccionar un archivo DM3 o DM4.");return "";}
    sha=IJ.checksum("SHA-256 file",path);if(sha!=lightSourceSha256){showMessage("Archivo rechazado","El SHA-256 no coincide con la imagen registrada.");return "";}
    lightSourcePath=normalizeStoredPath(path);lightAppendLog("SOURCE_RELOCATED","path="+lightSourcePath);return lightSourcePath;
}



function lightStampRevisionOnAllObjects(revisionId) {
    run("ROI Manager...");
    n = roiManager("count");
    for (stampIndex=0; stampIndex<n; stampIndex++) {
        safeRoiSelect(stampIndex);
        Roi.setProperty("Revision_id", revisionId);
        Roi.setProperty("Session_macro_version", macroVersion);
        roiManager("update");
    }
    return 1;
}

function lightSaveRevision() { lightSaveRevisionCore(1); }

function lightSaveRevisionCore(verbose) {
    preflightOk=quantitativeRevisionPreflight();if(preflightOk==0)return "";
    preparedOk=lightPrepareAnalysisState(0,0);if(preparedOk==0)return "";
    oldRev=lightCurrentRevision;rev="REV_"+lightTimestamp();
    revDir=lightNormalizeDir(lightJoin(lightJoin(lightImageDir,"roi_sessions"),rev));
    if(File.exists(revDir)){revisionUuid=lightUuid();revisionSuffix=substring(revisionUuid,0,8);rev=rev+"_"+revisionSuffix;}
    revDir=lightNormalizeDir(lightJoin(lightJoin(lightImageDir,"roi_sessions"),rev));lightMakeDir(revDir);
    lightCurrentRevision=rev;
    lightStampRevisionOnAllObjects(rev);
    updateSessionMetadataRoi();
    zip=lightJoin(revDir,"cavity_rois.zip");roiManager("save",zip);
    zipOk=lightVerifyRoiZip(zip);if(zipOk==0){
        lightCurrentRevision=oldRev;lightStampRevisionOnAllObjects(oldRev);updateSessionMetadataRoi();
        failedPath=lightJoin(revDir,"REVISION_FAILED.txt");File.saveString("FAILED\n",failedPath);
        showMessage("Revision no guardada","El ZIP de ROIs no supero la verificacion.");return "";
    }
    sha=IJ.checksum("SHA-256 file",zip);
    manifest="revision_id\t"+rev+"\nimage_id\t"+lightImageId+"\nproject_id\t"+lightProjectId+"\nproject_uid\t"+lightProjectUid+"\nsource_sha256\t"+lightSourceSha256+"\nroi_zip_sha256\t"+sha+"\nroi_count\t"+roiManager("count")+"\ncreated_ms\t"+d2s(getTime(),0)+"\ntool_version\t"+lightReleaseVersion+"\nvalidation_state\t"+lightValidationState+"\nparent_revision\t"+oldRev+"\nprepared_state_reused\t"+lightLastPreparationReused+"\nprepared_state_duration_ms\t"+d2s(lightLastPreparationDurationMs,0)+"\n";
    manifestPath=lightJoin(revDir,"revision_manifest.tsv");File.saveString(manifest,manifestPath);
    sessionJson=projectJson();sessionPath=lightJoin(revDir,"session_metadata.json");File.saveString(sessionJson,sessionPath);
    previewPath=lightJoin(revDir,"roi_overlay_preview.png");lightSaveOverlayPreview(previewPath);
    currentRevisionPath=lightJoin(lightImageDir,lightCurrentRevisionFileName);File.saveString(rev+"\n",currentRevisionPath);
    lightWriteImageMetadata();lightUpdateRegistry();lightAppendLog("REVISION_SAVED","revision="+rev+"; parent="+oldRev+"; roi_zip_sha256="+sha+"; prepared_reused="+lightLastPreparationReused+"; prepared_ms="+d2s(lightLastPreparationDurationMs,0));
    if(verbose)showMessage("Revision guardada",rev+"\nROIs: "+roiManager("count")+"\nSHA-256: "+sha+"\nPreparacion reutilizada: "+lightLastPreparationReused+"\n\nNo se sobrescribio ninguna revision anterior.");
    lightRefreshPanel();return rev;
}

function quantitativeRevisionPreflight() {
    imageOk=lightEnsureCurrentImage();if(imageOk==0)return 0;if(lightSourceSha256==""||lengthOf(lightSourceSha256)!=64){showMessage("Sin trazabilidad","Falta un SHA-256 valido de la fuente.");return 0;}path=lightResolveSourcePath();if(path=="")return 0;actual=IJ.checksum("SHA-256 file",path);if(actual!=lightSourceSha256){showMessage("Integridad bloqueada","La fuente actual no coincide con el SHA-256 registrado.");return 0;}lightWriteImageMetadata();lightUpdateRegistry();run("ROI Manager...");if(roiManager("count")==0){showMessage("Sin ROIs","No hay objetos para guardar.");return 0;}return 1;
}




function lightVerifyRoiZip(path) {
    if(!File.exists(path))return 0;
    js="(function(){var Z=Packages.java.util.zip.ZipFile,F=Packages.java.io.File,z=null,n=0;try{z=new Z(new F('"+jsEscape(path)+"'));var e=z.entries();while(e.hasMoreElements()){var x=e.nextElement();if(!x.isDirectory())n++;}return n>0?'1':'0';}catch(ex){return '0';}finally{try{if(z!=null)z.close();}catch(ignore){}}})();";
    status=""+eval("js",js);ok=0;if(status=="1")ok=1;return ok;
}

function lightLoadRevision() { imageOk=lightEnsureCurrentImage();if(imageOk==0)return;dir=lightJoin(lightImageDir,"roi_sessions");rev=lightChooseRevision(dir);if(rev!="")lightLoadRevisionById(rev); }

function lightLoadRevisionById(rev) {
    revDir=lightNormalizeDir(lightJoin(lightJoin(lightImageDir,"roi_sessions"),rev));zip=lightJoin(revDir,"cavity_rois.zip");
    zipOk=lightVerifyRoiZip(zip);manifestOk=lightVerifyRevisionManifest(revDir,zip);if(zipOk==0||manifestOk==0){showMessage("Revision invalida","La revision no supera la comprobacion de ZIP, manifiesto, identidad o SHA-256:\n"+revDir);return 0;}
    expectedProjectId=lightProjectId;expectedProjectUid=lightProjectUid;expectedImageId=lightImageId;expectedSha=lightSourceSha256;expectedRoot=lightProjectRoot;expectedImageDir=lightImageDir;expectedSource=lightSourcePath;expectedStored=lightSourceStoredPath;
    run("ROI Manager...");if(roiManager("count")>0)roiManager("reset");roiManager("open",zip);sessionRoiPath=zip;lightCurrentRevision=rev;
    loaded=loadSessionFromRois(0);
    loadedProjectId=lightProjectId;loadedProjectUid=lightProjectUid;loadedImageId=lightImageId;loadedSha=lightSourceSha256;
    if(!loaded||loadedProjectId!=expectedProjectId||loadedProjectUid!=expectedProjectUid||loadedImageId!=expectedImageId||loadedSha!=expectedSha){
        roiManager("reset");lightProjectId=expectedProjectId;lightProjectUid=expectedProjectUid;lightImageId=expectedImageId;lightSourceSha256=expectedSha;lightProjectRoot=expectedRoot;lightImageDir=expectedImageDir;lightSourcePath=expectedSource;lightSourceStoredPath=expectedStored;
        showMessage("Carga bloqueada","La identidad almacenada en las ROIs no coincide con el proyecto, la imagen o la fuente actuales.");return 0;
    }
    lightProjectId=expectedProjectId;lightProjectUid=expectedProjectUid;lightImageId=expectedImageId;lightSourceSha256=expectedSha;lightProjectRoot=expectedRoot;lightImageDir=expectedImageDir;lightSourcePath=expectedSource;lightSourceStoredPath=expectedStored;lightCurrentRevision=rev;
    lightInvalidateAnalysisCache();syncAllObjects(0);lightPreparedFingerprint=lightAnalysisInputFingerprint();lightPreparedAtMs=getTime();updateSessionMetadataRoi();lightWriteImageMetadata();lightUpdateRegistry();lightAppendLog("REVISION_LOADED","revision="+rev);
    showMessage("Revision cargada",rev+"\nROIs: "+roiManager("count"));lightShowPanel();return 1;
}



function lightSaveOverlayPreview(path) {
    if (nImages() <= 0) return 0;
    origId = getImageID();
    snapshotCurrentView();
    lightInteractiveRemovePreview();
    showAllRois();
    run("Flatten");
    saveAs("PNG", path);
    close();
    if (nImages() > 0) selectImage(origId);
    restoreViewSnapshot();
    lightInteractivePushState(lightInteractiveMode);
    ok = 0;
    if (File.exists(path)) ok = 1;
    return ok;
}


function lightComputeExactAreaAndDepth() {
    if(!updateScaleMaybe())return 0;
    startMs=getTime();
    areaFp=lightAreaInputFingerprint();
    reuseArea=0;
    if(areaFp!=""){
        if(areaFp==lightAreaFingerprint){
            if(!isNaN(lastValidAreaNm2)){
                if(lastValidAreaNm2>0)reuseArea=1;
            }
        }
    }
    if(reuseArea==1){
        lightAreaComputationMode="cache_reused";
        lightAreaComputationDurationMs=getTime()-startMs;
        return 1;
    }

    run("ROI Manager...");
    w=getWidth();h=getHeight();sx=nmPerPixelX;sy=nmPerPixelY;whole=lightUseWholeImage;sign=surfaceMaterialSign;mode=lightImageMode;excludeNeg=excludeNegativeDepth;
    exclusionTotal=countTypeFast("exclusion");
    if(whole==1){
        if(mode=="without_surface"){
            if(exclusionTotal==0){
                lightLastValidPixels=w*h;
                lastValidAreaNm2=lightLastValidPixels*sx*sy;
                lightLastDepthAreasNm2=newArray(0);
                lightLastDepthBinNm=1;
                lightAreaFingerprint=areaFp;
                lightAreaComputationMode="whole_image_formula";
                lightAreaComputationDurationMs=getTime()-startMs;
                if(lastValidAreaNm2>0)return 1;
                return 0;
            }
        }
    }

    js="(function(){var RM=Packages.ij.plugin.frame.RoiManager,BP=Packages.ij.process.ByteProcessor,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),w="+w+",h="+h+",sx="+d2s(sx,12)+",sy="+d2s(sy,12)+",whole="+whole+",mode='"+lightImageMode+"',msign="+d2s(sign,0)+",excludeNeg="+excludeNeg+";var ip=new BP(w,h);ip.setValue(whole?255:0);if(whole)ip.fill();var surf=null;for(var i=0;i<rois.length;i++){var t=String(rois[i].getProperty('Type')||'');if(t=='analysis_mask'&&!whole){ip.setValue(255);ip.fill(rois[i]);}if(t=='surface_reference')surf=rois[i];}for(i=0;i<rois.length;i++){t=String(rois[i].getProperty('Type')||'');if(t=='exclusion'){ip.setValue(0);ip.fill(rois[i]);}}var pix=ip.getPixels(),valid=0,bins=[];if(msign==0)msign=1;";
    js=js+"function signedDepth(cx,cy,fp){var n=fp==null?0:fp.npoints,best=1e300,bsgn=1;if(n<2)return NaN;for(var k=0;k<n-1;k++){var ax=fp.xpoints[k],ay=fp.ypoints[k],bx=fp.xpoints[k+1],by=fp.ypoints[k+1],dx=bx-ax,dy=by-ay,l2=dx*dx+dy*dy,u=l2>0?((cx-ax)*dx+(cy-ay)*dy)/l2:0;if(u<0)u=0;if(u>1)u=1;var nx=ax+u*dx,ny=ay+u*dy,px=(cx-nx)*sx,py=(cy-ny)*sy,dd=Math.sqrt(px*px+py*py);if(dd<best){best=dd;var cross=dx*(cy-ny)-dy*(cx-nx);bsgn=cross>=0?1:-1;}}return best*bsgn*msign;}";
    js=js+"if(mode=='with_surface'&&surf==null)return '0|0|-';var fp=surf==null?null:surf.getFloatPolygon();for(var y=0;y<h;y++)for(var x=0;x<w;x++){var q=y*w+x;if((pix[q]&255)==0)continue;if(mode=='with_surface'){var sd=signedDepth(x+0.5,y+0.5,fp);if(!isFinite(sd))continue;if(sd>=0){valid++;var b=Math.floor(sd);bins[b]=(bins[b]||0)+sx*sy;}else if(!excludeNeg)valid++;}else valid++;}var area=valid*sx*sy;var payload=bins.length?bins.map(function(v){return v||0;}).join(','):'-';return valid+'|'+area+'|'+payload;})();";
    result=""+eval("js",js);
    p=split(result,"|");
    if(p.length<2)return 0;
    lightLastValidPixels=parseFloat(p[0]);
    lastValidAreaNm2=parseFloat(p[1]);
    lightLastDepthAreasNm2=newArray(0);
    if(p.length>2){
        depthPayload=p[2];
        if(depthPayload!="-"){
            if(depthPayload!=""){
                a=split(depthPayload,",");
                lightLastDepthAreasNm2=newArray(a.length);
                for(i=0;i<a.length;i++)lightLastDepthAreasNm2[i]=parseFloat(a[i]);
            }
        }
    }
    lightLastDepthBinNm=1;
    lightAreaFingerprint=areaFp;
    lightAreaComputationMode="pixel_raster_exact";
    lightAreaComputationDurationMs=getTime()-startMs;
    if(lastValidAreaNm2>0)return 1;
    return 0;
}

function lightComputeFeatureDistanceAreas() {
    lightLastGbDistanceAreasNm2=newArray(0);
    lightLastDislocationDistanceAreasNm2=newArray(0);
    lightLastInterfaceDistanceAreasNm2=newArray(0);
    scaleReady=updateScaleMaybe();
    if(scaleReady==0)return 0;
    countsReady=lightRefreshObjectCounts();
    if(countsReady==0)return 0;
    gbFeatureCount=lightObjectCountGrainBoundaries;
    dislocationFeatureCount=lightObjectCountDislocations;
    interfaceFeatureCount=lightObjectCountInterfaces;
    noFeatures=0;
    if(gbFeatureCount==0){
        if(dislocationFeatureCount==0){
            if(interfaceFeatureCount==0)noFeatures=1;
        }
    }
    if(noFeatures==1)return 1;

    run("ROI Manager...");
    w=getWidth();h=getHeight();sx=nmPerPixelX;sy=nmPerPixelY;whole=lightUseWholeImage;binNm=lightFeatureDistanceBinNm;
    showStatus("Calculando areas exactas por distancia a microestructura...");
    js="(function(){var RM=Packages.ij.plugin.frame.RoiManager,BP=Packages.ij.process.ByteProcessor,rm=RM.getInstance2(),rois=rm==null?[]:rm.getRoisAsArray(),w="+w+",h="+h+",sx="+d2s(sx,12)+",sy="+d2s(sy,12)+",whole="+whole+",bin="+d2s(binNm,9)+",mode='"+lightImageMode+"',excludeNeg="+excludeNegativeDepth+",msign="+d2s(surfaceMaterialSign,0)+";var ip=new BP(w,h);ip.setValue(whole?255:0);if(whole)ip.fill();var surf=null;for(var i=0;i<rois.length;i++){var t=String(rois[i].getProperty('Type')||'');if(t=='analysis_mask'&&!whole){ip.setValue(255);ip.fill(rois[i]);}if(t=='surface_reference')surf=rois[i];}for(i=0;i<rois.length;i++){t=String(rois[i].getProperty('Type')||'');if(t=='exclusion'){ip.setValue(0);ip.fill(rois[i]);}}var pix=ip.getPixels();if(msign==0)msign=1;";
    js=js+"function signedSide(cx,cy,fp){var n=fp==null?0:fp.npoints,best=1e300,bsgn=1;if(n<2)return NaN;for(var k=0;k<n-1;k++){var ax=fp.xpoints[k],ay=fp.ypoints[k],bx=fp.xpoints[k+1],by=fp.ypoints[k+1],dx=bx-ax,dy=by-ay,l2=dx*dx+dy*dy,u=l2>0?((cx-ax)*dx+(cy-ay)*dy)/l2:0;if(u<0)u=0;if(u>1)u=1;var nx=ax+u*dx,ny=ay+u*dy,ex=cx-nx,ey=cy-ny,d2=ex*ex+ey*ey;if(d2<best){best=d2;var cross=dx*(cy-ny)-dy*(cx-nx);bsgn=cross>=0?1:-1;}}return Math.sqrt(best)*bsgn*msign;}if(mode=='with_surface'&&excludeNeg&&surf!=null){var sfp=surf.getFloatPolygon();for(var yy=0;yy<h;yy++)for(var xx=0;xx<w;xx++){var qq=yy*w+xx;if((pix[qq]&255)>0&&signedSide(xx+0.5,yy+0.5,sfp)<0)pix[qq]=0;}}";
    js=js+"function segs(type){var a=[];for(var r=0;r<rois.length;r++){if(String(rois[r].getProperty('Type')||'')!=type)continue;var fp=rois[r].getFloatPolygon(),n=fp==null?0:fp.npoints;for(var k=0;k<n-1;k++)a.push([fp.xpoints[k]*sx,fp.ypoints[k]*sy,fp.xpoints[k+1]*sx,fp.ypoints[k+1]*sy]);}return a;}function areas(ss){if(!ss.length)return [];var out=[];for(var y=0;y<h;y++)for(var x=0;x<w;x++){var q=y*w+x;if((pix[q]&255)==0)continue;var px=(x+0.5)*sx,py=(y+0.5)*sy,best=1e300;for(var k=0;k<ss.length;k++){var ax=ss[k][0],ay=ss[k][1],bx=ss[k][2],by=ss[k][3],dx=bx-ax,dy=by-ay,l2=dx*dx+dy*dy,u=l2>0?((px-ax)*dx+(py-ay)*dy)/l2:0;if(u<0)u=0;if(u>1)u=1;var nx=ax+u*dx,ny=ay+u*dy,ex=px-nx,ey=py-ny,d2=ex*ex+ey*ey;if(d2<best)best=d2;}var b=Math.floor(Math.sqrt(best)/bin);out[b]=(out[b]||0)+sx*sy;}return out;}function pack(a){return a.length?a.map(function(v){return v||0;}).join(','):'-';}return pack(areas(segs('grain_boundary')))+'|'+pack(areas(segs('dislocation')))+'|'+pack(areas(segs('interface')));})();";
    result=""+eval("js",js);
    parts=split(result,"|");
    if(parts.length<3)return 0;
    gbPayload=parts[0];
    dislocationPayload=parts[1];
    interfacePayload=parts[2];
    if(gbPayload!="-"){
        a=split(gbPayload,",");lightLastGbDistanceAreasNm2=newArray(a.length);
        for(i=0;i<a.length;i++)lightLastGbDistanceAreasNm2[i]=parseFloat(a[i]);
    }
    if(dislocationPayload!="-"){
        a=split(dislocationPayload,",");lightLastDislocationDistanceAreasNm2=newArray(a.length);
        for(i=0;i<a.length;i++)lightLastDislocationDistanceAreasNm2[i]=parseFloat(a[i]);
    }
    if(interfacePayload!="-"){
        a=split(interfacePayload,",");lightLastInterfaceDistanceAreasNm2=newArray(a.length);
        for(i=0;i<a.length;i++)lightLastInterfaceDistanceAreasNm2[i]=parseFloat(a[i]);
    }
    return 1;
}

function lightWriteFeatureDistanceOutputs(runDir) {
    path=lightJoin(runDir,"feature_distance_summary.csv");
    header="feature_type,bin_index,bin_low_nm,bin_high_nm,valid_area_nm2,N_count_valid,density_N_per_um2,mean_diameter_nm,N_size_valid\n";
    File.saveString(header,path);
    featureAreaOk=lightComputeFeatureDistanceAreas();
    if(featureAreaOk==0)return 0;
    types=newArray("grain_boundary","dislocation","interface");
    props=newArray("Distance_to_grain_boundary_nm","Distance_to_dislocation_nm","Distance_to_interface_nm");
    for(tt=0;tt<types.length;tt++){
        if(tt==0)areas=lightLastGbDistanceAreasNm2;
        else if(tt==1)areas=lightLastDislocationDistanceAreasNm2;
        else areas=lightLastInterfaceDistanceAreasNm2;
        if(areas.length==0)continue;
        counts=newArray(areas.length);sumD=newArray(areas.length);nD=newArray(areas.length);
        n=roiManager("count");
        for(i=0;i<n;i++){
            safeRoiSelect(i);
            cavityFlag=currentRoiIsCavity();
            if(cavityFlag==0)continue;
            propertyName=props[tt];
            dist=propNumber(propertyName,NaN);
            if(isNaN(dist))continue;
            if(dist<0)continue;
            b=floor(dist/lightFeatureDistanceBinNm);
            if(b<0)continue;
            if(b>=areas.length)continue;
            countFlag=round(propNumber("Count_valid",0));
            if(countFlag==1)counts[b]++;
            sizeFlag=round(propNumber("Size_valid",0));
            if(sizeFlag==1){
                d=propNumber("Equivalent_diameter_nm",NaN);
                if(!isNaN(d)){sumD[b]+=d;nD[b]++;}
            }
        }
        for(b=0;b<areas.length;b++){
            area=areas[b];den=NaN;if(area>0)den=counts[b]/(area/1000000);
            meanD=NaN;if(nD[b]>0)meanD=sumD[b]/nD[b];
            lowText=lightNum(b*lightFeatureDistanceBinNm);
            highText=lightNum((b+1)*lightFeatureDistanceBinNm);
            areaText=lightNum(area);densityText=lightNum(den);meanText=lightNum(meanD);
            line=types[tt]+","+b+","+lowText+","+highText+","+areaText+","+counts[b]+","+densityText+","+meanText+","+nD[b]+"\n";
            File.append(line,path);
        }
    }
    return 1;
}

function lightWriteRunChecksums(runDir) {
    js="(function(){var F=Packages.java.io.File,Files=Packages.java.nio.file.Files,MD=Packages.java.security.MessageDigest,BI=Packages.java.math.BigInteger,root=new F('"+jsEscape(runDir)+"');function hex(b){var s='';for(var i=0;i<b.length;i++){var v=Number(b[i])&255;s+=(v<16?'0':'')+v.toString(16);}return s;}function sha(f){return hex(MD.getInstance('SHA-256').digest(Files.readAllBytes(f.toPath())));}var a=root.listFiles(),rows=[];if(a!=null){java.util.Arrays.sort(a);for(var i=0;i<a.length;i++){if(!a[i].isFile()||String(a[i].getName())=='RUN_SHA256.txt')continue;rows.push(sha(a[i])+'  '+a[i].getName());}}Files.write(new F(root,'RUN_SHA256.txt').toPath(),new java.lang.String(rows.join('\\n')+'\\n').getBytes(Packages.java.nio.charset.StandardCharsets.UTF_8));return rows.length;})();";eval("js",js);
}

function lightHtmlEscape(s) { s=""+s;s=replace(s,"&","&amp;");s=replace(s,"<","&lt;");s=replace(s,">","&gt;");s=replace(s,"\"","&quot;");return s; }

function lightWriteHtmlReport(runDir) {
    sum=lightJoin(runDir,"image_summary.tsv");
    if(!File.exists(sum))return;

    escapedImageId=lightHtmlEscape(lightImageId);
    escapedProject=lightHtmlEscape(lightProjectName);
    escapedState=lightHtmlEscape(lightValidationState);
    sampleValue=lightKvRead(sum,"sample_name","");
    conditionValue=lightKvRead(sum,"experimental_condition","");
    escapedSample=lightHtmlEscape(sampleValue);
    escapedCondition=lightHtmlEscape(conditionValue);

    h="<!doctype html><html><head><meta charset=\"utf-8\"><title>Cavity TEM Light - "+escapedImageId+"</title><style>body{font-family:Arial,sans-serif;max-width:1100px;margin:32px auto;padding:0 20px;color:#222}h1{font-size:28px}h2{margin-top:30px}table{border-collapse:collapse;width:100%}td,th{border:1px solid #ccc;padding:7px;text-align:left}th{background:#f0f3f8}.warn{background:#fff3cd;padding:12px;border-left:5px solid #c58a00}.grid{display:grid;grid-template-columns:repeat(auto-fit,minmax(320px,1fr));gap:18px}.grid img{width:100%;border:1px solid #ddd}</style></head><body>";
    h=h+"<h1>Cavity TEM Light: informe de imagen</h1><p><b>Proyecto:</b> "+escapedProject+"<br><b>Imagen:</b> "+escapedImageId+"<br><b>Muestra:</b> "+escapedSample+"<br><b>Condicion:</b> "+escapedCondition+"</p>";
    h=h+"<div class=\"warn\"><b>Estado:</b> "+escapedState+". La densidad volumetrica se presenta como nominal N/(A*t), sin correcciones estereologicas ocultas.</div>";
    h=h+"<h2>Resultados principales</h2><table><tr><th>Parametro</th><th>Valor</th></tr>";
    keys=newArray("revision_id","run_id","valid_area_um2","foil_thickness_nm","N_count_valid","N_size_valid","density_N_per_um2","nominal_density_N_per_m3","mean_diameter_nm","std_diameter_nm","median_diameter_nm","projected_area_fraction_size_valid","nominal_spherical_volume_fraction_size_valid","total_dislocation_length_nm","dislocation_length_per_area_um_inv","nominal_traced_dislocation_density_m_minus2","total_grain_boundary_length_nm","grain_boundary_length_per_area_um_inv");
    for(i=0;i<keys.length;i++){
        resultValue=lightKvRead(sum,keys[i],"");
        escapedResult=lightHtmlEscape(resultValue);
        h=h+"<tr><td>"+keys[i]+"</td><td>"+escapedResult+"</td></tr>";
    }
    h=h+"</table><h2>Graficos</h2><div class=\"grid\">";
    imgs=newArray("diameter_histogram.png","diameter_cumulative.png","diameter_boxplot.png","diameter_vs_depth.png","density_vs_depth.png","mean_diameter_vs_depth.png","grain_boundary_density_vs_distance.png","grain_boundary_size_vs_distance.png","dislocation_density_vs_distance.png","dislocation_size_vs_distance.png","interface_density_vs_distance.png","interface_size_vs_distance.png");
    for(i=0;i<imgs.length;i++){
        imagePath=lightJoin(runDir,imgs[i]);
        if(File.exists(imagePath))h=h+"<figure><img src=\""+imgs[i]+"\"><figcaption>"+imgs[i]+"</figcaption></figure>";
    }
    h=h+"</div><h2>Archivos de trazabilidad</h2><ul><li>cavity_objects.tsv / .csv</li><li>analysis_regions.csv</li><li>microstructural_features.csv</li><li>feature_distance_summary.csv</li><li>band_summary.csv cuando existe superficie</li><li>run_manifest.json</li><li>RUN_SHA256.txt</li></ul></body></html>";
    reportPath=lightJoin(runDir,"report.html");
    File.saveString(h,reportPath);
}

function lightExportCurrentImage() {
    lightInteractiveRemovePreview();
    exportPreflightOk=quantitativeExportPreflight();
    if(exportPreflightOk==0)return;
    areaOk=lightComputeExactAreaAndDepth();
    if(areaOk==0){showMessage("Area no calculada","No se pudo obtener un area valida positiva.");return;}
    rev=lightSaveRevisionCore(0);
    if(rev=="")return;

    stamp=lightTimestamp();
    runId="RUN_"+stamp;
    sessionsDir=lightJoin(lightImageDir,"roi_sessions");
    revisionDir=lightJoin(sessionsDir,rev);
    measurementDir=lightJoin(revisionDir,"measurement_runs");
    runDirRaw=lightJoin(measurementDir,runId);
    runDir=lightNormalizeDir(runDirRaw);
    lightMakeDir(runDir);
    lightCurrentRunId=runId;

    cavTsv=lightJoin(runDir,"cavity_objects.tsv");
    cavCsv=lightJoin(runDir,"cavity_objects.csv");
    featCsv=lightJoin(runDir,"microstructural_features.csv");
    regCsv=lightJoin(runDir,"analysis_regions.csv");
    header="image_id\tcavity_id\tcavity_class\tgeometry_kind\tx_center_px\ty_center_px\tx_center_nm\ty_center_nm\tequivalent_diameter_nm\tmajor_axis_nm\tminor_axis_nm\taspect_ratio\tprojected_area_nm2\testimated_spherical_volume_nm3\tcount_valid\tsize_valid\tposition_valid\tmanual_excluded\tedge_intersecting\texclusion_reason\tduplicate_status\tduplicate_partners\tsigned_depth_nm\tabsolute_depth_nm\tband_index\tdistance_to_grain_boundary_nm\tdistance_to_dislocation_nm\tdistance_to_interface_nm\tmeasurement_source\tlast_edit_method\tlast_edit_ms\n";
    File.saveString(header,cavTsv);
    csvHeader=replace(header,"\t",",");File.saveString(csvHeader,cavCsv);
    File.saveString("image_id,feature_id,type,length_nm,length_um,confidence,notes\n",featCsv);
    File.saveString("image_id,region_id,type,area_nm2,area_um2,label\n",regCsv);

    n=roiManager("count");countValid=0;sizeValidN=0;diam=newArray(n);depths=newArray(n);dn=0;
    sumProjectedArea=0;sumSphereVolume=0;dislLen=0;gbLen=0;interfaceLen=0;dislN=0;gbN=0;interfaceN=0;
    for(i=0;i<n;i++){
        if(i%25==0)showProgress(i,max2(n,1));
        safeRoiSelect(i);typ=currentRoiType();
        if(typ=="cavity"){
            currentName=Roi.getName;
            id=propString("Cavity_id",currentName);cc=propString("Cavity_class","confirmed");g=propString("Geometry_kind","circle");
            xpx=propNumber("Center_x_px",NaN);ypx=propNumber("Center_y_px",NaN);xnm=propNumber("Center_x_nm",NaN);ynm=propNumber("Center_y_nm",NaN);
            d=propNumber("Equivalent_diameter_nm",NaN);maj=propNumber("Major_axis_nm",NaN);minr=propNumber("Minor_axis_nm",NaN);asp=propNumber("Aspect_ratio",NaN);
            ar=propNumber("Cavity_area_nm2",NaN);vo=propNumber("Estimated_spherical_volume_nm3",NaN);
            includeFallback=propNumber("Include_in_statistics",0);cv=round(propNumber("Count_valid",includeFallback));sv=round(propNumber("Size_valid",0));pv=round(propNumber("Position_valid",0));
            man=round(propNumber("Manual_excluded",0));edge=round(propNumber("Edge_intersecting",0));reason=propString("Exclusion_reason","");
            dup=propString("Duplicate_status","clear");partners=propString("Duplicate_partners","");sd=propNumber("Signed_depth_nm",NaN);ad=propNumber("Depth_absolute_nm",NaN);
            bi=round(propNumber("Band_index",-1));gb=propNumber("Distance_to_grain_boundary_nm",NaN);di=propNumber("Distance_to_dislocation_nm",NaN);it=propNumber("Distance_to_interface_nm",NaN);method=propString("Measurement_source","");lastEditMethod=propString("Last_edit_method","");lastEditMs=propString("Last_edit_ms","");

            fImage=lightTsvClean(lightImageId);fId=lightTsvClean(id);fClass=lightTsvClean(cc);fGeometry=lightTsvClean(g);
            fXpx=lightNum(xpx);fYpx=lightNum(ypx);fXnm=lightNum(xnm);fYnm=lightNum(ynm);fD=lightNum(d);fMaj=lightNum(maj);fMin=lightNum(minr);fAsp=lightNum(asp);
            fArea=lightNum(ar);fVolume=lightNum(vo);fReason=lightTsvClean(reason);fDup=lightTsvClean(dup);fPartners=lightTsvClean(partners);
            fSigned=lightNum(sd);fAbsolute=lightNum(ad);fGb=lightNum(gb);fDi=lightNum(di);fIt=lightNum(it);fMethod=lightTsvClean(method);fLastEditMethod=lightTsvClean(lastEditMethod);fLastEditMs=lightTsvClean(lastEditMs);
            lineT=fImage+"\t"+fId+"\t"+fClass+"\t"+fGeometry;
            lineT=lineT+"\t"+fXpx+"\t"+fYpx+"\t"+fXnm+"\t"+fYnm+"\t"+fD+"\t"+fMaj+"\t"+fMin+"\t"+fAsp;
            lineT=lineT+"\t"+fArea+"\t"+fVolume+"\t"+cv+"\t"+sv+"\t"+pv+"\t"+man+"\t"+edge+"\t"+fReason+"\t"+fDup+"\t"+fPartners;
            lineT=lineT+"\t"+fSigned+"\t"+fAbsolute+"\t"+bi+"\t"+fGb+"\t"+fDi+"\t"+fIt+"\t"+fMethod+"\t"+fLastEditMethod+"\t"+fLastEditMs+"\n";
            File.append(lineT,cavTsv);
            lineCsv=lightTsvLineToCsv(lineT);File.append(lineCsv,cavCsv);
            if(cv==1)countValid++;
            if(sv==1){
                if(!isNaN(d)){
                    diam[dn]=d;depths[dn]=sd;dn++;sizeValidN++;
                    if(!isNaN(ar))sumProjectedArea+=ar;
                    if(!isNaN(vo))sumSphereVolume+=vo;
                }
            }
        }else if(isLinearFeatureType(typ)){
            currentName=Roi.getName;fid=propString("Feature_id",currentName);ln=propNumber("Length_nm",NaN);conf=propString("Confidence","");note=propString("Notes","");
            featureImageCsv=lightCsv(lightImageId);featureIdCsv=lightCsv(fid);featureTypeCsv=lightCsv(typ);featureConfidenceCsv=lightCsv(conf);featureNoteCsv=lightCsv(note);
            featureLengthNm=lightNum(ln);featureLengthUm=lightNum(ln/1000);
            featureRow=featureImageCsv+","+featureIdCsv+","+featureTypeCsv+","+featureLengthNm+","+featureLengthUm+","+featureConfidenceCsv+","+featureNoteCsv+"\n";
            File.append(featureRow,featCsv);
            if(!isNaN(ln)){
                if(typ=="dislocation"){dislLen+=ln;dislN++;}
                else if(typ=="grain_boundary"){gbLen+=ln;gbN++;}
                else if(typ=="interface"){interfaceLen+=ln;interfaceN++;}
            }
        }else{
            regionFlag=0;if(typ=="analysis_mask")regionFlag=1;if(typ=="exclusion")regionFlag=1;
            if(regionFlag==1){
                rid=Roi.getName;area=propNumber("Area_nm2",NaN);fallbackLabel=propString("Exclusion_reason","");label=propString("Mask_label",fallbackLabel);
                regionImageCsv=lightCsv(lightImageId);regionIdCsv=lightCsv(rid);regionTypeCsv=lightCsv(typ);regionAreaNm2=lightNum(area);regionAreaUm2=lightNum(area/1000000);regionLabelCsv=lightCsv(label);
                regionRow=regionImageCsv+","+regionIdCsv+","+regionTypeCsv+","+regionAreaNm2+","+regionAreaUm2+","+regionLabelCsv+"\n";
                File.append(regionRow,regCsv);
            }
        }
    }
    showProgress(1,1);

    diam=lightArrayPrefix(diam,dn);depths=lightArrayPrefix(depths,dn);lightComputeStats(diam);
    areaUm2=lastValidAreaNm2/1000000;density2=NaN;if(areaUm2>0)density2=countValid/areaUm2;
    volNm3=NaN;density3=NaN;if(lightThicknessNm>0){volNm3=lastValidAreaNm2*lightThicknessNm;if(volNm3>0)density3=countValid*1e27/volNm3;}
    projectedFraction=NaN;if(lastValidAreaNm2>0)projectedFraction=sumProjectedArea/lastValidAreaNm2;
    nominalSphereFraction=NaN;if(volNm3>0)nominalSphereFraction=sumSphereVolume/volNm3;
    dislPerArea=NaN;gbPerArea=NaN;interfacePerArea=NaN;
    if(areaUm2>0){dislPerArea=(dislLen/1000)/areaUm2;gbPerArea=(gbLen/1000)/areaUm2;interfacePerArea=(interfaceLen/1000)/areaUm2;}
    dislNominalM2=NaN;if(volNm3>0)dislNominalM2=dislLen/volNm3*1e18;

    cleanSample=lightTsvClean(sampleName);cleanCondition=lightTsvClean(experimentalCondition);
    validAreaNm2Text=lightNum(lastValidAreaNm2);areaUm2Text=lightNum(areaUm2);thicknessText=lightNum(lightThicknessNm);volumeText=lightNum(volNm3);
    density2Text=lightNum(density2);density3Text=lightNum(density3);meanText=lightNum(lightStatMean);stdText=lightNum(lightStatStd);medianText=lightNum(lightStatMedian);
    q25Text=lightNum(lightStatQ25);q75Text=lightNum(lightStatQ75);minText=lightNum(lightStatMin);maxText=lightNum(lightStatMax);
    projectedAreaText=lightNum(sumProjectedArea);projectedFractionText=lightNum(projectedFraction);sphereVolumeText=lightNum(sumSphereVolume);sphereFractionText=lightNum(nominalSphereFraction);
    dislLenText=lightNum(dislLen);dislPerAreaText=lightNum(dislPerArea);dislNominalText=lightNum(dislNominalM2);gbLenText=lightNum(gbLen);gbPerAreaText=lightNum(gbPerArea);
    interfaceLenText=lightNum(interfaceLen);interfacePerAreaText=lightNum(interfacePerArea);featureBinText=lightNum(lightFeatureDistanceBinNm);
    preparationMsText=lightNum(lightLastPreparationDurationMs);areaMsText=lightNum(lightAreaComputationDurationMs);

    summary="";
    summary=summary+"project_id\t"+lightProjectId+"\n";summary=summary+"image_id\t"+lightImageId+"\n";summary=summary+"sample_name\t"+cleanSample+"\n";
    summary=summary+"experimental_condition\t"+cleanCondition+"\n";summary=summary+"image_mode\t"+lightImageMode+"\n";summary=summary+"source_sha256\t"+lightSourceSha256+"\n";
    summary=summary+"revision_id\t"+rev+"\n";summary=summary+"run_id\t"+runId+"\n";summary=summary+"valid_area_nm2\t"+validAreaNm2Text+"\n";summary=summary+"valid_area_um2\t"+areaUm2Text+"\n";
    summary=summary+"foil_thickness_nm\t"+thicknessText+"\n";summary=summary+"nominal_volume_nm3\t"+volumeText+"\n";summary=summary+"N_count_valid\t"+countValid+"\n";summary=summary+"N_size_valid\t"+sizeValidN+"\n";
    summary=summary+"density_N_per_um2\t"+density2Text+"\n";summary=summary+"nominal_density_N_per_m3\t"+density3Text+"\n";
    summary=summary+"mean_diameter_nm\t"+meanText+"\n";summary=summary+"std_diameter_nm\t"+stdText+"\n";summary=summary+"median_diameter_nm\t"+medianText+"\n";
    summary=summary+"q25_diameter_nm\t"+q25Text+"\n";summary=summary+"q75_diameter_nm\t"+q75Text+"\n";summary=summary+"min_diameter_nm\t"+minText+"\n";summary=summary+"max_diameter_nm\t"+maxText+"\n";
    summary=summary+"projected_area_size_valid_nm2\t"+projectedAreaText+"\n";summary=summary+"projected_area_fraction_size_valid\t"+projectedFractionText+"\n";
    summary=summary+"estimated_spherical_volume_size_valid_nm3\t"+sphereVolumeText+"\n";summary=summary+"nominal_spherical_volume_fraction_size_valid\t"+sphereFractionText+"\n";
    summary=summary+"total_dislocation_length_nm\t"+dislLenText+"\n";summary=summary+"dislocation_length_per_area_um_inv\t"+dislPerAreaText+"\n";
    summary=summary+"nominal_traced_dislocation_density_m_minus2\t"+dislNominalText+"\n";summary=summary+"total_grain_boundary_length_nm\t"+gbLenText+"\n";
    summary=summary+"grain_boundary_length_per_area_um_inv\t"+gbPerAreaText+"\n";summary=summary+"total_interface_length_nm\t"+interfaceLenText+"\n";
    summary=summary+"interface_length_per_area_um_inv\t"+interfacePerAreaText+"\n";summary=summary+"feature_distance_bin_nm\t"+featureBinText+"\n";
    summary=summary+"prepared_state_reused\t"+lightLastPreparationReused+"\n";summary=summary+"prepared_state_duration_ms\t"+preparationMsText+"\n";
    summary=summary+"area_computation_mode\t"+lightAreaComputationMode+"\n";summary=summary+"area_computation_duration_ms\t"+areaMsText+"\n";
    summary=summary+"interactive_preview\t"+lightInteractivePreviewEnabled+"\n";summary=summary+"interactive_resize_step_nm\t"+lightNum(lightInteractiveResizeStepNm)+"\n";
    summary=summary+"exact_labels_visible\t"+showRoiLabels+"\n";summary=summary+"exact_label_mode\troi_name_v1\n";
    summary=summary+"identity_audit_errors\t"+lightLastIdAuditErrors+"\n";summary=summary+"identity_audit_duplicate_ids\t"+lightLastIdAuditDuplicateIds+"\n";
    summary=summary+"validation_state\t"+lightValidationState+"\n";
    summaryPath=lightJoin(runDir,"image_summary.tsv");File.saveString(summary,summaryPath);

    dislLenUmText=lightNum(dislLen/1000);gbLenUmText=lightNum(gbLen/1000);interfaceLenUmText=lightNum(interfaceLen/1000);
    ms="feature_type,N_objects,total_length_nm,total_length_um,length_per_area_um_inv,nominal_traced_line_density_m_minus2\n";
    ms=ms+"dislocation,"+dislN+","+dislLenText+","+dislLenUmText+","+dislPerAreaText+","+dislNominalText+"\n";
    ms=ms+"grain_boundary,"+gbN+","+gbLenText+","+gbLenUmText+","+gbPerAreaText+",\n";
    ms=ms+"interface,"+interfaceN+","+interfaceLenText+","+interfaceLenUmText+","+interfacePerAreaText+",\n";
    microSummaryPath=lightJoin(runDir,"microstructure_summary.csv");File.saveString(ms,microSummaryPath);

    bandOk=lightWriteBandOutputs(runDir);
    featureOk=lightWriteFeatureDistanceOutputs(runDir);
    diameterOk=lightWriteDiameterValues(runDir,diam,depths);
    lightCreateCharts(runDir);
    manifestText=projectJson();manifestPath=lightJoin(runDir,"run_manifest.json");File.saveString(manifestText,manifestPath);
    lightWriteHtmlReport(runDir);lightWriteRunChecksums(runDir);

    revisionRel="roi_sessions/"+rev+"/measurement_runs/"+runId;
    currentRunPath=lightJoin(lightImageDir,"current_run.txt");File.saveString(revisionRel+"\n",currentRunPath);
    lightWriteImageMetadata();lightUpdateRegistry();
    lightAppendLog("RUN_EXPORTED","revision="+rev+"; run="+runId+"; N="+countValid+"; area_nm2="+validAreaNm2Text+"; band_ok="+bandOk+"; feature_ok="+featureOk+"; diameter_ok="+diameterOk);
    lightLastExportDir=runDir;
    densityDisplay=d2s(density2,6);density3Display=lightNum(density3);
    showMessage("Calculos y exportacion completados","Imagen: "+lightImageId+"\nRevision: "+rev+"\nN valido: "+countValid+"\nArea: "+d2s(areaUm2,6)+" um^2\nDensidad: "+densityDisplay+" cavidades/um^2\nDensidad volumetrica nominal: "+density3Display+" m^-3\n\nCarpeta:\n"+runDir);
    lightRefreshPanel();
}

function lightWriteBandOutputs(runDir) {
    path=lightJoin(runDir,"depth_area_1nm.tsv");
    t="bin_index\tlow_nm\thigh_nm\tvalid_area_nm2\n";
    for(i=0;i<lightLastDepthAreasNm2.length;i++){
        areaText=lightNum(lightLastDepthAreasNm2[i]);
        t=t+i+"\t"+i+"\t"+(i+1)+"\t"+areaText+"\n";
    }
    File.saveString(t,path);
    if(lightImageMode!="with_surface")return 1;
    counts=newArray(bandCount);sumD=newArray(bandCount);nD=newArray(bandCount);
    n=roiManager("count");
    for(i=0;i<n;i++){
        safeRoiSelect(i);
        cavityFlag=currentRoiIsCavity();
        if(cavityFlag==0)continue;
        b=round(propNumber("Band_index",-1));
        bandInside=0;
        if(b>=0){if(b<bandCount)bandInside=1;}
        if(bandInside==0)continue;
        countFlag=round(propNumber("Count_valid",0));
        if(countFlag==1)counts[b]++;
        sizeFlag=round(propNumber("Size_valid",0));
        if(sizeFlag==1){sumD[b]+=propNumber("Equivalent_diameter_nm",0);nD[b]++;}
    }
    t="band_index,band_low_nm,band_high_nm,valid_area_nm2,N_count_valid,density_N_per_um2,mean_diameter_nm,N_size_valid\n";
    for(b=0;b<bandCount;b++){
        area=0;lo=floor(b*bandNm);hi=floor((b+1)*bandNm);
        j=lo;
        while(j<hi){
            if(j>=lightLastDepthAreasNm2.length)break;
            area+=lightLastDepthAreasNm2[j];j++;
        }
        den=NaN;if(area>0)den=counts[b]/(area/1000000);
        md=NaN;if(nD[b]>0)md=sumD[b]/nD[b];
        lowText=lightNum(b*bandNm);highText=lightNum((b+1)*bandNm);areaText=lightNum(area);denText=lightNum(den);meanText=lightNum(md);
        t=t+b+","+lowText+","+highText+","+areaText+","+counts[b]+","+denText+","+meanText+","+nD[b]+"\n";
    }
    File.saveString(t,lightJoin(runDir,"band_summary.csv"));
    return 1;
}

function lightWriteDiameterValues(runDir,d,dep) {
    t="diameter_nm,signed_depth_nm\n";
    for(i=0;i<d.length;i++){
        diameterText=lightNum(d[i]);
        depthText=lightNum(dep[i]);
        t=t+diameterText+","+depthText+"\n";
    }
    outputPath=lightJoin(runDir,"diameter_values.csv");
    File.saveString(t,outputPath);
    return 1;
}

function lightComputeStats(a) {
    lightStatMean=NaN;lightStatStd=NaN;lightStatMedian=NaN;lightStatQ25=NaN;lightStatQ75=NaN;lightStatMin=NaN;lightStatMax=NaN;
    lightStatsStatus="NOT_RUN";lightStatsErrorCode="";
    work=newArray(a.length);
    for(si=0;si<a.length;si++){
        value=a[si];
        if(isNaN(value)||isNaN(value-value)){lightStatsStatus="ERROR";lightStatsErrorCode="NON_FINITE_OR_NON_NUMERIC_VALUE";return 0;}
        work[si]=value;
    }
    if(work.length==0){lightStatsStatus="ZERO_EVENTS_VALID";return 1;}
    Array.sort(work);
    s=0;for(si=0;si<work.length;si++)s+=work[si];lightStatMean=s/work.length;
    if(work.length>1){ss=0;for(si=0;si<work.length;si++)ss+=(work[si]-lightStatMean)*(work[si]-lightStatMean);lightStatStd=sqrt(ss/(work.length-1));}
    lightStatMedian=lightPercentileSorted(work,50);if(lightStatsStatus=="ERROR")return 0;
    lightStatQ25=lightPercentileSorted(work,25);if(lightStatsStatus=="ERROR")return 0;
    lightStatQ75=lightPercentileSorted(work,75);if(lightStatsStatus=="ERROR")return 0;
    lightStatMin=work[0];lightStatMax=work[work.length-1];lightStatsStatus="PASS";return 1;
}

function lightPercentileSorted(a,p) {
    if(a.length==0)return NaN;
    if(isNaN(p)||isNaN(p-p)||p<0||p>100){lightStatsStatus="ERROR";lightStatsErrorCode="INVALID_PERCENTILE";return NaN;}
    for(sp=0;sp<a.length;sp++){
        value=a[sp];
        if(isNaN(value)||isNaN(value-value)){lightStatsStatus="ERROR";lightStatsErrorCode="NON_FINITE_OR_NON_NUMERIC_VALUE";return NaN;}
        if(sp>0&&a[sp]<a[sp-1]){lightStatsStatus="ERROR";lightStatsErrorCode="ARRAY_NOT_SORTED";return NaN;}
    }
    x=(a.length-1)*p/100;l=floor(x);u=l;if(x!=l)u=l+1;
    if(l==u)return a[l];return a[l]+(x-l)*(a[u]-a[l]);
}

function lightCreateCharts(runDir) {
    js="(function(){var Files=Packages.java.nio.file.Files,Paths=Packages.java.nio.file.Paths,CS=Packages.java.nio.charset.StandardCharsets,F=Packages.java.io.File,BI=Packages.java.awt.image.BufferedImage,C=Packages.java.awt.Color,Font=Packages.java.awt.Font,IO=Packages.javax.imageio.ImageIO,dir='"+jsEscape(runDir)+"',bin="+d2s(lightHistogramBinNm,6)+";";
    js=js+"function read(p){return String(new java.lang.String(Files.readAllBytes(Paths.get(p)),CS.UTF_8));}function canvas(){return new BI(1200,800,BI.TYPE_INT_RGB);}function save(im,n){IO.write(im,'png',new F(dir+n));}";
    js=js+"function axes(g,t,xl,yl){g.setColor(C.WHITE);g.fillRect(0,0,1200,800);g.setColor(C.BLACK);g.setFont(new Font('SansSerif',Font.BOLD,24));g.drawString(t,70,42);g.setFont(new Font('SansSerif',Font.PLAIN,17));g.drawString(xl,430,775);g.rotate(-Math.PI/2);g.drawString(yl,-520,28);g.rotate(Math.PI/2);g.drawLine(80,700,1140,700);g.drawLine(80,80,80,700);}";
    js=js+"function lineChart(title,xl,yl,x,y,name){if(!x.length)return;var xmin=Math.min.apply(null,x),xmax=Math.max.apply(null,x),ymin=Math.min.apply(null,y),ymax=Math.max.apply(null,y);if(xmax==xmin)xmax=xmin+1;if(ymax==ymin)ymax=ymin+1;var im=canvas(),g=im.createGraphics();axes(g,title,xl,yl);g.setFont(new Font('SansSerif',Font.PLAIN,14));g.drawString(String(xmin.toPrecision(4)),80,725);g.drawString(String(xmax.toPrecision(4)),1080,725);g.drawString(String(ymin.toPrecision(4)),35,700);g.drawString(String(ymax.toPrecision(4)),35,90);g.setColor(new C(55,90,165));for(var i=0;i<x.length;i++){var px=80+(x[i]-xmin)/(xmax-xmin)*1060,py=700-(y[i]-ymin)/(ymax-ymin)*600;g.fillOval(Math.round(px-4),Math.round(py-4),8,8);if(i>0){var ppx=80+(x[i-1]-xmin)/(xmax-xmin)*1060,ppy=700-(y[i-1]-ymin)/(ymax-ymin)*600;g.drawLine(Math.round(ppx),Math.round(ppy),Math.round(px),Math.round(py));}}g.dispose();save(im,name);}";
    js=js+"var p=new F(dir+'diameter_values.csv');if(!p.exists())return 'NO_DATA';var ls=read(String(p)).split(/\\r?\\n/),d=[],pts=[];for(var i=1;i<ls.length;i++){if(!ls[i])continue;var q=ls[i].split(','),vx=parseFloat(q[0]),vy=parseFloat(q[1]);if(isFinite(vx)){d.push(vx);if(isFinite(vy))pts.push([vy,vx]);}}if(!d.length)return 'NO_DATA';var sorted=d.slice(0).sort(function(a,b){return a-b;}),mn=sorted[0],mx=sorted[sorted.length-1],nb=Math.max(1,Math.floor((mx-mn)/bin)+1),co=[];for(i=0;i<nb;i++)co[i]=0;for(i=0;i<d.length;i++)co[Math.min(nb-1,Math.floor((d[i]-mn)/bin))]++;var ym=Math.max.apply(null,co),im=canvas(),g=im.createGraphics();axes(g,'Distribucion de tamanos','Diametro equivalente (nm)','Numero de cavidades');g.setColor(new C(70,110,180));for(i=0;i<nb;i++){var xx=80+i*1060/nb,ww=Math.max(1,1060/nb-2),hh=ym?co[i]*600/ym:0;g.fillRect(Math.round(xx),Math.round(700-hh),Math.round(ww),Math.round(hh));}g.dispose();save(im,'diameter_histogram.png');";
    js=js+"im=canvas();g=im.createGraphics();axes(g,'Distribucion acumulada','Diametro equivalente (nm)','Fraccion acumulada');g.setColor(new C(40,80,150));if(sorted.length==1)g.fillOval(607,96,8,8);for(i=1;i<sorted.length;i++){var x1=80+(sorted[i-1]-mn)/(mx-mn||1)*1060,y1=700-(i/sorted.length)*600,x2=80+(sorted[i]-mn)/(mx-mn||1)*1060,y2=700-((i+1)/sorted.length)*600;g.drawLine(Math.round(x1),Math.round(y1),Math.round(x2),Math.round(y2));}g.dispose();save(im,'diameter_cumulative.png');";
    js=js+"function pct(pctv){var z=(sorted.length-1)*pctv/100,l=Math.floor(z),u=(z===l?l:l+1);return l==u?sorted[l]:sorted[l]+(z-l)*(sorted[u]-sorted[l]);}var q1=pct(25),med=pct(50),q3=pct(75);im=canvas();g=im.createGraphics();axes(g,'Resumen de tamanos','Diametro equivalente (nm)','Distribucion');var rng=(mx-mn)||1,px=function(v){return 80+(v-mn)/rng*1060;};g.setColor(new C(70,110,180));g.fillRect(Math.round(px(q1)),330,Math.max(2,Math.round(px(q3)-px(q1))),160);g.setColor(C.BLACK);g.drawRect(Math.round(px(q1)),330,Math.max(2,Math.round(px(q3)-px(q1))),160);g.drawLine(Math.round(px(med)),320,Math.round(px(med)),500);g.drawLine(Math.round(px(mn)),410,Math.round(px(q1)),410);g.drawLine(Math.round(px(q3)),410,Math.round(px(mx)),410);g.drawLine(Math.round(px(mn)),370,Math.round(px(mn)),450);g.drawLine(Math.round(px(mx)),370,Math.round(px(mx)),450);g.dispose();save(im,'diameter_boxplot.png');";
    js=js+"if(pts.length){var xx=[],yy=[];pts.sort(function(a,b){return a[0]-b[0];});for(i=0;i<pts.length;i++){xx.push(pts[i][0]);yy.push(pts[i][1]);}lineChart('Tamano frente a profundidad','Profundidad firmada (nm)','Diametro equivalente (nm)',xx,yy,'diameter_vs_depth.png');}";
    js=js+"function csvRows(file){var f=new F(dir+file);if(!f.exists())return [];var l=read(String(f)).split(/\\r?\\n/),h=l[0].split(','),out=[];for(var r=1;r<l.length;r++){if(!l[r])continue;var c=l[r].split(','),o={};for(var k=0;k<h.length;k++)o[h[k]]=c[k]||'';out.push(o);}return out;}var br=csvRows('band_summary.csv');if(br.length){var bx=[],bd=[],bm=[];for(i=0;i<br.length;i++){var xv=(parseFloat(br[i].band_low_nm)+parseFloat(br[i].band_high_nm))/2,dv=parseFloat(br[i].density_N_per_um2),mv=parseFloat(br[i].mean_diameter_nm);if(isFinite(dv)){bx.push(xv);bd.push(dv);}if(isFinite(mv))bm.push([xv,mv]);}lineChart('Densidad frente a profundidad','Profundidad (nm)','Cavidades por um2',bx,bd,'density_vs_depth.png');var mxs=[],mys=[];for(i=0;i<bm.length;i++){mxs.push(bm[i][0]);mys.push(bm[i][1]);}lineChart('Tamano medio frente a profundidad','Profundidad (nm)','Diametro medio (nm)',mxs,mys,'mean_diameter_vs_depth.png');}";
    js=js+"var fr=csvRows('feature_distance_summary.csv'),types=['grain_boundary','dislocation','interface'];for(var ti=0;ti<types.length;ti++){var fx=[],fd=[],fsx=[],fsy=[];for(i=0;i<fr.length;i++){if(fr[i].feature_type!=types[ti])continue;var xv=(parseFloat(fr[i].bin_low_nm)+parseFloat(fr[i].bin_high_nm))/2,dv=parseFloat(fr[i].density_N_per_um2),mv=parseFloat(fr[i].mean_diameter_nm);if(isFinite(dv)){fx.push(xv);fd.push(dv);}if(isFinite(mv)){fsx.push(xv);fsy.push(mv);}}lineChart('Densidad frente a distancia: '+types[ti],'Distancia (nm)','Cavidades por um2',fx,fd,types[ti]+'_density_vs_distance.png');lineChart('Tamano frente a distancia: '+types[ti],'Distancia (nm)','Diametro medio (nm)',fsx,fsy,types[ti]+'_size_vs_distance.png');}return 'OK';})();";
    eval("js",js);
}


function lightRunCombinedAnalysis() {
    projectOk=lightEnsureProject();
    if(projectOk==0)return;
    hasRows=lightRegistryHasDataRows();
    if(hasRows==0){
        repairText=lightRepairImageRegistryCore(1);
        repairReady=startsWith(repairText,"OK|");
        if(repairReady==0){showMessage("Sin imagenes combinables","No se pudo reconstruir images.tsv desde los metadatos canonicos.");return;}
    }
    ids=lightChooseRegistryImages(1);
    if(ids=="")return;
    Dialog.create("Analisis combinado");
    Dialog.addNumber("Ancho del histograma (nm):",lightHistogramBinNm);
    Dialog.addNumber("Banda comun de profundidad (nm):",bandNm);
    Dialog.show();
    hist=Dialog.getNumber();commonBand=Dialog.getNumber();
    if(hist<=0)hist=1;if(commonBand<=0)commonBand=50;
    result=lightCombinedJava(ids,hist,commonBand,0);
    mixedFlag=startsWith(result,"MIXED|");
    if(mixedFlag==1){
        p=split(result,"|");mixedDescription="condiciones no especificadas";
        if(p.length>1)mixedDescription=p[1];
        continueMixed=getBoolean("Las imagenes mezclan muestras o condiciones:\n"+mixedDescription+"\n\nContinuar de forma intencionada?","Combinar","Cancelar");
        if(continueMixed==0)return;
        result=lightCombinedJava(ids,hist,commonBand,1);
    }
    errorFlag=startsWith(result,"ERROR|");
    if(errorFlag==1){showMessage("Analisis no realizado",substring(result,6));return;}
    okFlag=startsWith(result,"OK|");
    if(okFlag==0){showMessage("Analisis no realizado","La respuesta del analisis combinado no tiene un formato reconocido:\n"+result);return;}
    p=split(result,"|");
    if(p.length<7){showMessage("Analisis no realizado","La respuesta del analisis combinado esta incompleta:\n"+result);return;}
    combinedPath=p[1];combinedImages=p[2];combinedN=p[3];combinedArea=p[4];combinedDensity=p[5];combinedDensity3=p[6];
    lightWriteCombinedHtml(combinedPath);
    lightAppendLog("COMBINED_EXPORTED","images="+ids+"; path="+combinedPath);
    showMessage("Analisis combinado completado","Carpeta: "+combinedPath+"\nImagenes: "+combinedImages+"\nN total: "+combinedN+"\nArea total: "+combinedArea+" um^2\nDensidad agregada: "+combinedDensity+" cavidades/um^2\nDensidad volumetrica nominal: "+combinedDensity3+" m^-3");
}

function lightCombinedJava(ids,hist,commonBand,allowMixed) {
    js="";
    js=js+"(function () { var Files = Packages.java.nio.file.Files; var Paths = Packages.java.nio.file.Paths; var CS = Packages.java.nio.charset.StandardCharsets; var F = Packages.java.io.File; var BI = Packages.java.awt.image.BufferedImage; var C = Packages.java.awt.Color; var Font = Packages.java.awt.Font; var IO = Packages.javax.imageio.ImageIO; var root = '";
    js=js+jsEscape(lightProjectRoot);
    js=js+"'; var ids = '";
    js=js+jsEscape(ids);
    js=js+"'.split(';'); var hist = ";
    js=js+d2s(hist,6);
    js=js+"; var bw = ";
    js=js+d2s(commonBand,6);
    js=js+"; var allowMixed = ";
    js=js+d2s(allowMixed,0);
    js=js+"; var projectId = '";
    js=js+jsEscape(lightProjectId);
    js=js+"'; function read(path) { return String(new java.lang.String(Files.readAllBytes(Paths.get(path)), CS.UTF_8)); } function write(path, text) { var file = new F(path); file.getParentFile().mkdirs(); Files.write(Paths.get(path), new java.lang.String(text).getBytes(CS.UTF_8)); } function kv(path) { var out = {}; var lines = read(path).split(/\\r?\\n/); for (var i = 0; i < lines.length; i++) { var k = lines[i].indexOf('\\t'); if (k > 0) out[lines[i].slice(0, k)] = lines[i].slice(k + 1); } return out; } function num(value) { var n = parseFloat(value); return isFinite(n) ? n : NaN; } function csv(value) { value = String(value == null || (typeof value === 'number' && !isFinite(value)) ? '' : value); return /[\",\\n]/.test(value) ? '\"' + value.replace(/\"/g, '\"\"') + '\"' : value; } function jsonString(value) { return '\"' + String(value) .replace(/\\\\/g, '\\\\\\\\') .replace(/\"/g, '\\\\\"') .replace(/\\r/g, '\\\\r') .replace(/\\n/g, '\\\\n') + '\"'; } function stamp() { var d = new Date(); function p(n) { return ('0' + n).slice(-2); } return d.getFullYear() + p(d.getMonth() + 1) + p(d.getDate()) + '_' + p(d.getHours()) + p(d.getMinutes()) + p(d.getSeconds()) + '_' + ('00' + d.getMilliseconds()).slice(-3) + '_' + String(java.util.UUID.randomUUID()).slice(0, 8); } var rows = []; var cavities = []; var diameters = []; var depths = []; var conditions = {}; var totalN = 0; var totalArea = 0; var totalVolume = 0; var allThickness = true; var depthArea = []; var surfaceImages = 0; var featureAgg = {}; for (var ii = 0; ii < ids.length; ii++) { var id = ids[ii]; var imageDir = root + 'images/' + id + '/'; var currentRun = imageDir + 'current_run.txt'; if (!new F(currentRun).exists()) return 'ERROR|La imagen ' + id + ' no tiene una exportacion vigente.'; var relativeRun = read(currentRun).trim(); var runDir = imageDir + relativeRun + '/'; var summaryPath = runDir + 'image_summary.tsv'; var cavityPath = runDir + 'cavity_objects.tsv'; if (!new F(summaryPath).exists() || !new F(cavityPath).exists()) return 'ERROR|Faltan resultados de ' + id; var summary = kv(summaryPath); conditions[(summary.sample_name || '') + ' | ' + (summary.experimental_condition || '')] = 1; var n = num(summary.N_count_valid); var area = num(summary.valid_area_nm2); var thickness = num(summary.foil_thickness_nm); if (!isFinite(n) || n < 0 || !isFinite(area) || area <= 0) return 'ERROR|Resumen cuantitativo invalido para ' + id; totalN += n; totalArea += area; if (isFinite(thickness) && thickness > 0) totalVolume += area * thickness; else allThickness = false; rows.push([ id, summary.sample_name || '', summary.experimental_condition || '', summary.image_mode || '', n, area / 1e6, thickness, num(summary.density_N_per_um2), num(summary.nominal_density_N_per_m3), relativeRun ]); var cavityLines = read(cavityPath).split(/\\r?\\n/); var cavityHeader = cavityLines[0].split('\\t'); var ix = {}; for (var j = 0; j < cavityHeader.length; j++) ix[cavityHeader[j]] = j; if (ix.size_valid == null || ix.count_valid == null || ix.equivalent";
    js=js+"_diameter_nm == null) { return 'ERROR|Columnas de cavidades incompletas para ' + id; } for (j = 1; j < cavityLines.length; j++) { if (!cavityLines[j]) continue; var cavity = cavityLines[j].split('\\t'); cavities.push(cavity); if (parseInt(cavity[ix.size_valid] || '0', 10) === 1) { var diameter = num(cavity[ix.equivalent_diameter_nm]); if (isFinite(diameter)) diameters.push(diameter); } if (parseInt(cavity[ix.count_valid] || '0', 10) === 1 && ix.signed_depth_nm != null) { var depth = num(cavity[ix.signed_depth_nm]); if (isFinite(depth) && depth >= 0) depths.push(depth); } } if ((summary.image_mode || '') === 'with_surface') { surfaceImages++; var depthPath = runDir + 'depth_area_1nm.tsv'; if (new F(depthPath).exists()) { var areaLines = read(depthPath).split(/\\r?\\n/); for (j = 1; j < areaLines.length; j++) { if (!areaLines[j]) continue; var areaCols = areaLines[j].split('\\t'); var low = num(areaCols[1]); var areaValue = num(areaCols[3]); var band = Math.floor(low / bw); if (!isFinite(depthArea[band])) depthArea[band] = 0; depthArea[band] += areaValue; } } } var featurePath = runDir + 'feature_distance_summary.csv'; if (new F(featurePath).exists()) { var featureLines = read(featurePath).split(/\\r?\\n/); var featureHeader = featureLines[0].split(','); var fi = {}; for (j = 0; j < featureHeader.length; j++) fi[featureHeader[j]] = j; for (j = 1; j < featureLines.length; j++) { if (!featureLines[j]) continue; var fc = featureLines[j].split(','); var key = fc[fi.feature_type] + '|' + fc[fi.bin_index]; var fArea = num(fc[fi.valid_area_nm2]); var fN = num(fc[fi.N_count_valid]); var fMean = num(fc[fi.mean_diameter_nm]); var fSizeN = num(fc[fi.N_size_valid]); if (!featureAgg[key]) { featureAgg[key] = { type: fc[fi.feature_type], bin: num(fc[fi.bin_index]), low: num(fc[fi.bin_low_nm]), high: num(fc[fi.bin_high_nm]), area: 0, n: 0, diameterSum: 0, diameterN: 0 }; } featureAgg[key].area += isFinite(fArea) ? fArea : 0; featureAgg[key].n += isFinite(fN) ? fN : 0; if (isFinite(fMean) && isFinite(fSizeN)) { featureAgg[key].diameterSum += fMean * fSizeN; featureAgg[key].diameterN += fSizeN; } } } } var conditionKeys = Object.keys(conditions); if (conditionKeys.length > 1 && !allowMixed) return 'MIXED|' + conditionKeys.join(' ; '); var output = root + 'combined_runs/COMBINED_' + stamp() + '/'; var outputFile = new F(output); outputFile.mkdirs(); var density2D = totalArea > 0 ? totalN / (totalArea / 1e6) : NaN; var density3D = allThickness && totalVolume > 0 ? totalN * 1e27 / totalVolume : NaN; var perImage = 'image_id,sample_name,experimental_condition,image_mode,N_count_valid,valid_area_um2,foil_thickness_nm,density_N_per_um2,nominal_density_N_per_m3,source_run\\n'; for (ii = 0; ii < rows.length; ii++) perImage += rows[ii].map(csv).join(',') + '\\n'; write(output + 'per_image_summary.csv', perImage); diameters.sort(function (a, b) { return a - b; }); function percentile(pct) { if (!diameters.length) return NaN; var position = (diameters.length - 1) * pct / 100; var low";
    js=js+"er = Math.floor(position); var upper = Math.ceil(position); return lower === upper ? diameters[lower] : diameters[lower] + (position - lower) * (diameters[upper] - diameters[lower]); } var mean = NaN; var std = NaN; if (diameters.length) { var sum = 0; for (ii = 0; ii < diameters.length; ii++) sum += diameters[ii]; mean = sum / diameters.length; if (diameters.length > 1) { var ss = 0; for (ii = 0; ii < diameters.length; ii++) ss += (diameters[ii] - mean) * (diameters[ii] - mean); std = Math.sqrt(ss / (diameters.length - 1)); } } var combinedId = outputFile.getName(); var combinedSummary = 'project_id,combined_run_id,image_count,N_count_valid,total_valid_area_nm2,total_valid_area_um2,total_nominal_volume_nm3,density_N_per_um2,nominal_density_N_per_m3,N_size_valid,mean_diameter_nm,std_diameter_nm,median_diameter_nm,q25_diameter_nm,q75_diameter_nm,min_diameter_nm,max_diameter_nm,mixed_conditions,surface_image_count\\n'; combinedSummary += [ projectId, combinedId, ids.length, totalN, totalArea, totalArea / 1e6, allThickness ? totalVolume : '', density2D, isFinite(density3D) ? density3D : '', diameters.length, mean, std, percentile(50), percentile(25), percentile(75), diameters.length ? diameters[0] : '', diameters.length ? diameters[diameters.length - 1] : '', conditionKeys.length > 1 ? 1 : 0, surfaceImages ].map(csv).join(',') + '\\n'; write(output + 'combined_summary.csv', combinedSummary); var cavityOut = 'image_id\\tcavity_id\\tcavity_class\\tgeometry_kind\\tx_center_px\\ty_center_px\\tx_center_nm\\ty_center_nm\\tequivalent_diameter_nm\\tmajor_axis_nm\\tminor_axis_nm\\taspect_ratio\\tprojected_area_nm2\\testimated_spherical_volume_nm3\\tcount_valid\\tsize_valid\\tposition_valid\\tmanual_excluded\\tedge_intersecting\\texclusion_reason\\tduplicate_status\\tduplicate_partners\\tsigned_depth_nm\\tabsolute_depth_nm\\tband_index\\tdistance_to_grain_boundary_nm\\tdistance_to_dislocation_nm\\tdistance_to_interface_nm\\tmeasurement_source\\tlast_edit_method\\tlast_edit_ms\\n'; for (ii = 0; ii < cavities.length; ii++) cavityOut += cavities[ii].join('\\t') + '\\n'; write(output + 'combined_cavity_objects.tsv', cavityOut); if (surfaceImages > 0) { var depthCounts = []; for (ii = 0; ii < depths.length; ii++) { var depthBand = Math.floor(depths[ii] / bw); depthCounts[depthBand] = (depthCounts[depthBand] || 0) + 1; } var bandSummary = 'band_index,band_low_nm,band_high_nm,valid_area_nm2,N_count_valid,density_N_per_um2\\n'; var maxBand = Math.max(depthArea.length, depthCounts.length); for (ii = 0; ii < maxBand; ii++) { var bandArea = depthArea[ii] || 0; var bandN = depthCounts[ii] || 0; var bandDensity = bandArea > 0 ? bandN / (bandArea / 1e6) : NaN; bandSummary += [ii, ii * bw, (ii + 1) * bw, bandArea, bandN, isFinite(bandDensity) ? bandDensity : ''].join(',') + '\\n'; } write(output + 'combined_band_summary.csv', bandSummary); } var featureKeys = Object.keys(featureAgg).sort(function (a, b) { var aa = featureAgg[a]; var bb = featureAgg[b]; return aa.type === bb.type ? aa.bin - bb.bin : (aa.type < bb.type ? -1 : 1); }); if (featu";
    js=js+"reKeys.length) { var featureSummary = 'feature_type,bin_index,bin_low_nm,bin_high_nm,valid_area_nm2,N_count_valid,density_N_per_um2,mean_diameter_nm,N_size_valid\\n'; for (ii = 0; ii < featureKeys.length; ii++) { var feature = featureAgg[featureKeys[ii]]; var featureDensity = feature.area > 0 ? feature.n / (feature.area / 1e6) : NaN; var featureMean = feature.diameterN > 0 ? feature.diameterSum / feature.diameterN : NaN; featureSummary += [ feature.type, feature.bin, feature.low, feature.high, feature.area, feature.n, isFinite(featureDensity) ? featureDensity : '', isFinite(featureMean) ? featureMean : '', feature.diameterN ].join(',') + '\\n'; } write(output + 'combined_feature_distance_summary.csv', featureSummary); } var imageJson = []; for (ii = 0; ii < ids.length; ii++) imageJson.push(jsonString(ids[ii])); var manifest = '{\\n' + '  \"format\": \"Cavity TEM Light combined run\",\\n' + '  \"project_id\": ' + jsonString(projectId) + ',\\n' + '  \"images\": [' + imageJson.join(',') + '],\\n' + '  \"image_count\": ' + ids.length + ',\\n' + '  \"density_areal_N_per_um2\": ' + density2D + ',\\n' + '  \"density_volumetric_nominal_N_per_m3\": ' + (isFinite(density3D) ? density3D : 'null') + ',\\n' + '  \"mixed_conditions\": ' + (conditionKeys.length > 1) + ',\\n' + '  \"common_depth_band_nm\": ' + bw + '\\n' + '}\\n'; write(output + 'combined_manifest.json', manifest); if (diameters.length) { var minDiameter = diameters[0]; var maxDiameter = diameters[diameters.length - 1]; var binCount = Math.max(1, Math.floor((maxDiameter - minDiameter) / hist) + 1); var counts = []; for (ii = 0; ii < binCount; ii++) counts[ii] = 0; for (ii = 0; ii < diameters.length; ii++) counts[Math.min(binCount - 1, Math.floor((diameters[ii] - minDiameter) / hist))]++; var maxCount = Math.max.apply(null, counts); var image = new BI(1200, 800, BI.TYPE_INT_RGB); var graphics = image.createGraphics(); graphics.setColor(C.WHITE); graphics.fillRect(0, 0, 1200, 800); graphics.setColor(C.BLACK); graphics.setFont(new Font('SansSerif', Font.BOLD, 24)); graphics.drawString('Distribucion combinada de tamanos', 70, 42); graphics.drawLine(80, 700, 1140, 700); graphics.drawLine(80, 80, 80, 700); graphics.setColor(new C(70, 110, 180)); for (ii = 0; ii < binCount; ii++) { var x = 80 + ii * 1060 / binCount; var width = Math.max(1, 1060 / binCount - 2); var height = maxCount ? counts[ii] * 600 / maxCount : 0; graphics.fillRect(Math.round(x), Math.round(700 - height), Math.round(width), Math.round(height)); } graphics.dispose(); IO.write(image, 'png', new F(output + 'combined_diameter_histogram.png')); } return 'OK|' + output + '|' + ids.length + '|' + totalN + '|' + (totalArea / 1e6) + '|' + density2D + '|' + (isFinite(density3D) ? density3D : 'N/A'); })();";
    return ""+eval("js",js);
}



function lightWriteCombinedHtml(runDir) {
    sum=lightJoin(runDir,"combined_summary.csv");
    if(!File.exists(sum))return 0;
    lines=split(File.openAsString(sum),"\n");
    if(lines.length<2)return 0;
    heads=split(lines[0],",");vals=split(lines[1],",");
    h="<!doctype html><html><head><meta charset=\"utf-8\"><title>Cavity TEM Light - analisis combinado</title><style>body{font-family:Arial,sans-serif;max-width:1100px;margin:32px auto;padding:0 20px;color:#222}table{border-collapse:collapse;width:100%}td,th{border:1px solid #ccc;padding:7px;text-align:left}th{background:#f0f3f8}.warn{background:#fff3cd;padding:12px;border-left:5px solid #c58a00}img{max-width:100%;border:1px solid #ddd}</style></head><body><h1>Analisis combinado de imagenes</h1><div class=\"warn\">Densidades agregadas mediante suma de recuentos y denominadores. No se usa la media simple de densidades. Densidad volumetrica nominal N/(A*t).</div><h2>Resumen</h2><table><tr><th>Parametro</th><th>Valor</th></tr>";
    limit=heads.length;
    if(vals.length<limit)limit=vals.length;
    for(i=0;i<limit;i++){
        headEscaped=lightHtmlEscape(heads[i]);valueEscaped=lightHtmlEscape(vals[i]);
        h=h+"<tr><td>"+headEscaped+"</td><td>"+valueEscaped+"</td></tr>";
    }
    h=h+"</table><h2>Imagenes incluidas</h2><p>Consulte <code>per_image_summary.csv</code> para la lista exacta, la condicion y el run de origen de cada imagen.</p>";
    histogramPath=lightJoin(runDir,"combined_diameter_histogram.png");
    if(File.exists(histogramPath))h=h+"<h2>Distribucion combinada</h2><img src=\"combined_diameter_histogram.png\">";
    h=h+"<h2>Archivos</h2><ul><li>per_image_summary.csv</li><li>combined_cavity_objects.tsv</li><li>combined_band_summary.csv, cuando hay superficie</li><li>combined_feature_distance_summary.csv, cuando hay microestructura</li><li>combined_manifest.json</li></ul></body></html>";
    reportPath=lightJoin(runDir,"report.html");File.saveString(h,reportPath);lightWriteRunChecksums(runDir);return 1;
}

function lightChooseRegistryImages(multiple) {
    reg=lightJoin(lightProjectRoot,lightRegistryFileName);if(!File.exists(reg)){showMessage("Sin imagenes","El proyecto no contiene un registro de imagenes.");return "";}js="(function(){var Files=Packages.java.nio.file.Files,Paths=Packages.java.nio.file.Paths,CS=Packages.java.nio.charset.StandardCharsets,JList=Packages.javax.swing.JList,JScroll=Packages.javax.swing.JScrollPane,JOption=Packages.javax.swing.JOptionPane,Mode=Packages.javax.swing.ListSelectionModel,p='"+jsEscape(reg)+"',multi="+multiple+";var tx=String(new java.lang.String(Files.readAllBytes(Paths.get(p)),CS.UTF_8)),ls=tx.split(/\\r?\\n/),ids=[],labels=[];for(var i=1;i<ls.length;i++){if(!ls[i])continue;var c=ls[i].split('\\t');if(c.length<1)continue;ids.push(c[0]);labels.push(c[0]+' | '+(c[5]||'')+' | '+(c[6]||'')+' | '+(c[7]||''));}if(!ids.length)return '';var list=new JList(labels);list.setSelectionMode(multi?Mode.MULTIPLE_INTERVAL_SELECTION:Mode.SINGLE_SELECTION);list.setVisibleRowCount(Math.min(16,ids.length));var r=JOption.showConfirmDialog(Packages.ij.IJ.getInstance(),new JScroll(list),multi?'Selecciona imagenes para combinar':'Selecciona una imagen',JOption.OK_CANCEL_OPTION,JOption.PLAIN_MESSAGE);if(r!=JOption.OK_OPTION)return '';var ix=list.getSelectedIndices(),out=[];for(i=0;i<ix.length;i++)out.push(ids[ix[i]]);return out.join(';');})();";return ""+eval("js",js);
}

function lightChooseRevision(dir) { if(!File.exists(dir))return "";js="(function(){var F=Packages.java.io.File,JOption=Packages.javax.swing.JOptionPane,root=new F('"+jsEscape(dir)+"'),a=root.listFiles(),v=[];if(a!=null)for(var i=0;i<a.length;i++)if(a[i].isDirectory()&&String(a[i].getName()).indexOf('REV_')==0)v.push(String(a[i].getName()));v.sort().reverse();if(!v.length)return '';var x=JOption.showInputDialog(Packages.ij.IJ.getInstance(),'Selecciona una revision','Cargar revision',JOption.PLAIN_MESSAGE,null,v,v[0]);return x==null?'':String(x);})();";return ""+eval("js",js); }

function setMetadataImageProperties() {
    if(nImages()<=0)return 0;
    code="var imp=Packages.ij.IJ.getImage();imp.setProperty('CavityTEMLight.ProjectId','"+jsEscape(lightProjectId)+"');imp.setProperty('CavityTEMLight.ImageId','"+jsEscape(lightImageId)+"');imp.setProperty('CavityTEMLight.SourceSHA256','"+jsEscape(lightSourceSha256)+"');'OK';";
    eval("js",code);return 1;
}


function lightScientificObjectCount() {
    countsReady = lightRefreshObjectCounts();
    if (countsReady == 0) return 0;
    total = lightObjectCountCavities + lightObjectCountMasks + lightObjectCountExclusions;
    total = total + lightObjectCountSurfaces + lightObjectCountGrainBoundaries;
    total = total + lightObjectCountDislocations + lightObjectCountInterfaces;
    return total;
}


function lightVerifyRevisionManifest(revDir,zip) {
    man=lightJoin(revDir,"revision_manifest.tsv");if(!File.exists(man))return 0;
    revPath=substring(revDir,0,lengthOf(revDir)-1);expectedRevisionId=File.getName(revPath);manifestRevisionId=lightKvRead(man,"revision_id","");if(manifestRevisionId!=expectedRevisionId)return 0;
    manifestImageId=lightKvRead(man,"image_id","");if(manifestImageId!=lightImageId)return 0;
    manifestProjectId=lightKvRead(man,"project_id","");if(manifestProjectId!=lightProjectId)return 0;
    manifestProjectUid=lightKvRead(man,"project_uid",lightProjectUid);if(manifestProjectUid!=lightProjectUid)return 0;
    manifestSourceSha=lightKvRead(man,"source_sha256","");if(manifestSourceSha!=lightSourceSha256)return 0;
    expectedZipSha=lightKvRead(man,"roi_zip_sha256","");if(expectedZipSha=="")return 0;actualZipSha=IJ.checksum("SHA-256 file",zip);if(actualZipSha!=expectedZipSha)return 0;
    return 1;
}
function lightAppendLog(eventName,details) {
    if(lightProjectRoot=="")return 0;
    guardOk=lightCanonicalProjectGuard("escribir el log");
    if(guardOk==0)return 0;

    header="timestamp\tevent\tproject_id\tproject_uid\timage_id\toperator\tdetails\n";
    timestampText=lightTimestamp();
    cleanEvent=lightTsvClean(eventName);
    cleanProject=lightTsvClean(lightProjectId);
    cleanUid=lightTsvClean(lightProjectUid);
    cleanImage=lightTsvClean(lightImageId);
    cleanOperator=lightTsvClean(operatorName);
    cleanDetails=lightTsvClean(details);
    line=timestampText+"\t"+cleanEvent+"\t"+cleanProject+"\t"+cleanUid+"\t"+cleanImage+"\t"+cleanOperator+"\t"+cleanDetails+"\n";

    projectLogsDir=lightJoin(lightProjectRoot,"logs");
    projectLogPath=lightJoin(projectLogsDir,"events.tsv");
    if(!File.exists(projectLogPath))File.saveString(header,projectLogPath);
    File.append(line,projectLogPath);

    if(lightImageId!=""){
        imagesRoot=lightJoin(lightProjectRoot,"images");
        imagePath=lightJoin(imagesRoot,lightImageId);
        expectedImageDir=lightNormalizeDir(imagePath);
        imageDirExists=lightFileExistsFlag(expectedImageDir);
        if(imageDirExists==1){
            imageLogsDir=lightJoin(expectedImageDir,"logs");
            imageLogPath=lightJoin(imageLogsDir,"events.tsv");
            if(!File.exists(imageLogPath))File.saveString(header,imageLogPath);
            File.append(line,imageLogPath);
        }
    }
    return 1;
}

function lightCopyFileVerified(src,dst,sha) {
    js="(function(){var Files=Packages.java.nio.file.Files,Paths=Packages.java.nio.file.Paths,Std=Packages.java.nio.file.StandardCopyOption;try{Files.copy(Paths.get('"+jsEscape(src)+"'),Paths.get('"+jsEscape(dst)+"'),Std.REPLACE_EXISTING);return '1';}catch(e){return '0';}})();";
    copyStatus=""+eval("js",js);if(copyStatus!="1")return 0;if(!File.exists(dst))return 0;actualSha=IJ.checksum("SHA-256 file",dst);if(actualSha!=sha)return 0;return 1;
}

function lightExtension(path) { n=toLowerCase(File.getName(path));p=lastIndexOf(n,".");if(p<0)return "";return substring(n,p+1); }
function lightEnsureProject() {
    if(!lightProjectLoaded||lightProjectRoot==""){
        showMessage("Sin proyecto","Cree o abra primero un proyecto Cavity TEM Light.");
        return 0;
    }
    guardOk=lightCanonicalProjectGuard("continuar");
    if(guardOk==0)return 0;
    return 1;
}
function lightEnsureCurrentImage() {
    projectOk=lightEnsureProject();
    if(projectOk==0)return 0;
    missingImage=0;
    if(nImages()<=0)missingImage=1;
    if(lightImageId=="")missingImage=1;
    if(missingImage==1){
        showMessage("Sin imagen","Abra o seleccione una imagen registrada.");
        return 0;
    }

    imagesRoot=lightJoin(lightProjectRoot,"images");
    imagePath=lightJoin(imagesRoot,lightImageId);
    expectedImageDir=lightNormalizeDir(imagePath);
    meta=lightJoin(expectedImageDir,lightImageMetadataFileName);
    metaMatches=lightImageMetadataMatches(meta,lightImageId,lightSourceSha256);
    if(metaMatches==0){
        showMessage("Registro incompleto","No existe o no coincide el metadato canonico de la imagen activa:\n"+meta);
        return 0;
    }

    lightImageDir=expectedImageDir;
    widthDefault=getWidth();heightDefault=getHeight();
    widthValue=lightKvNumber(meta,"width_px",widthDefault);
    heightValue=lightKvNumber(meta,"height_px",heightDefault);
    ew=round(widthValue);eh=round(heightValue);
    dimensionMismatch=0;
    if(ew!=getWidth())dimensionMismatch=1;
    if(eh!=getHeight())dimensionMismatch=1;
    if(dimensionMismatch==1){
        showMessage("Imagen incompatible","Las dimensiones activas no coinciden con el registro de la imagen.");
        return 0;
    }

    identity=lightActiveImageIdentity();
    parts=split(identity,"|");
    identityOk=1;
    if(parts.length<3)identityOk=0;
    if(identityOk==1){
        identityProject=parts[0];identityImage=parts[1];identitySha=parts[2];
        if(identityProject!=lightProjectId)identityOk=0;
        if(identityImage!=lightImageId)identityOk=0;
        if(identitySha!=lightSourceSha256)identityOk=0;
    }
    if(identityOk==0){
        showMessage("Imagen activa no vinculada","La ventana activa no tiene la identidad exacta del proyecto, la imagen y la fuente registrados.\n\nUse Seleccionar imagen del proyecto o vuelva a registrar la imagen activa. Esta comprobacion evita medir por error otra imagen con las mismas dimensiones.");
        return 0;
    }
    return 1;
}

function lightMakeDir(path) {
    if(path=="")return 0;
    js="(function(){var f=new Packages.java.io.File('"+jsEscape(path)+"');return (f.exists()||f.mkdirs())?'1':'0';})();";
    makeResult=eval("js",js);if(makeResult=="1")return 1;showMessage("Carpeta no creada",path);return 0;
}

function lightNormalizeDir(path) {
    if(path=="")return "";
    normalizedPath=normalizeStoredPath(path);
    if(!endsWith(normalizedPath,"/"))normalizedPath=normalizedPath+"/";
    return normalizedPath;
}

function lightJoin(a,b) {
    if(a==""){
        normalizedB=normalizeStoredPath(b);
        return normalizedB;
    }
    normalizedA=normalizeStoredPath(a);
    normalizedB=normalizeStoredPath(b);
    if(endsWith(normalizedA,"/"))normalizedA=substring(normalizedA,0,lengthOf(normalizedA)-1);
    while(startsWith(normalizedB,"/"))normalizedB=substring(normalizedB,1);
    joinedValue=normalizedA+"/"+normalizedB;
    return joinedValue;
}

// Compatibility: retain explicit String.trim(...) for compatibility. The reported R1 error
// was caused by a compound string expression passed to lightJoin().
function lightSanitizeId(s) { s=String.trim(s);out="";for(i=0;i<lengthOf(s);i++){c=substring(s,i,i+1);ok=0;if(indexOf("abcdefghijklmnopqrstuvwxyzABCDEFGHIJKLMNOPQRSTUVWXYZ0123456789_-",c)>=0)ok=1;if(ok==1)out=out+c;else if(c==" "||c=="."||c=="/"||c=="\\")out=out+"_";}while(indexOf(out,"__")>=0)out=replace(out,"__","_");if(out=="")out="IMAGE";return out; }
function lightEscapeRunPath(s) { return replace(s,"]","\\]"); }
function lightTsvClean(s) { s=""+s;s=replace(s,"\t"," ");s=replace(s,"\r"," ");s=replace(s,"\n"," ");return s; }
// Compatibility: retain explicit String.trim(...) for unambiguous TSV reads.
function lightKvRead(path,key,defaultValue) {
    if(!File.exists(path))return defaultValue;
    t=File.openAsString(path);
    ls=split(t,"\n");
    for(i=0;i<ls.length;i++){
        p=indexOf(ls[i],"\t");
        if(p>0){
            rowKey=substring(ls[i],0,p);
            if(rowKey==key){
                rawValue=substring(ls[i],p+1);
                cleanValue=String.trim(rawValue);
                return cleanValue;
            }
        }
    }
    return defaultValue;
}

function lightKvNumber(path,key,defaultValue) {
    s=lightKvRead(path,key,"");
    if(s==""||s=="NaN")return defaultValue;
    v=parseFloat(s);
    if(isNaN(v))return defaultValue;
    return v;
}
function lightUuid() { return ""+eval("js","String(java.util.UUID.randomUUID());"); }
function lightTimestamp() { return ""+eval("js","var d=new Date(),p=function(n){return ('0'+n).slice(-2);};d.getFullYear()+p(d.getMonth()+1)+p(d.getDate())+'_'+p(d.getHours())+p(d.getMinutes())+p(d.getSeconds())+'_'+('00'+d.getMilliseconds()).slice(-3);"); }
function lightCsv(s) { s=""+s;s=replace(s,"\"","\"\"");return "\""+s+"\""; }
function lightNum(v) { if(isNaN(v))return "";return d2s(v,12); }
function lightArrayPrefix(a,n) { b=newArray(n);for(ii=0;ii<n;ii++)b[ii]=a[ii];return b; }
function lightTsvLineToCsv(line) { line=replace(line,"\r","");line=replace(line,"\n","");a=split(line,"\t");out="";for(ii=0;ii<a.length;ii++){if(ii>0)out=out+",";out=out+lightCsv(a[ii]);}return out+"\n"; }
